<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="conditionNum_channel" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Condition_Num_Channel</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="laserOn_channel" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Laser_On_Channel</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="hardwareTriggered_channel" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Hardware_Triggered_Channel</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="logging_channel" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Logging_Channel</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Start_Delay_Channel" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Start_Delay_Channel</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Stim_Duration_Channel" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Stim_Duration_Channel</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Laser_Power_Channel" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Laser_Power_Channel</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="verbose_channel" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Verbose_Channel</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="laser_ON" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Laser_On</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="hardwareTriggered_ON" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Hardware_Triggered_On</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="logging_ON" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Logging_On</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Start_Delay_Seconds" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Start_Delay_Seconds</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Laser_Power_mW" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Laser_Power_mW</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Stim_Duration_Seconds" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Stim_Duration_Seconds</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="verbose_ON" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Verbose_On</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="conditionNum" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>4</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Condition_Num</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Map_Arg_Keys</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Condition_Num_Channel</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Laser_On_Channel</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Hardware_Triggered_Channel</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>4</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Logging_Channel</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>8</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Verbose_Channel</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>16</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Stim_Duration_Channel</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>32</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Laser_Power_Channel</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>64</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start_Delay_Channel</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>128</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="MulticastSubject">
              <Name>Arg_Keys_Byte</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="48" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="11" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="48" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="12" To="15" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="17" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="17" To="48" Label="Source3" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="18" To="21" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="23" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source2" />
            <Edge From="23" To="48" Label="Source4" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="24" To="27" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="29" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source2" />
            <Edge From="29" To="48" Label="Source5" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="30" To="33" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="35" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source2" />
            <Edge From="35" To="48" Label="Source6" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="36" To="39" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="41" Label="Source1" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="40" To="41" Label="Source2" />
            <Edge From="41" To="48" Label="Source7" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="42" To="45" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="44" To="47" Label="Source1" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="46" To="47" Label="Source2" />
            <Edge From="47" To="48" Label="Source8" />
            <Edge From="48" To="49" Label="Source1" />
            <Edge From="49" To="50" Label="Source1" />
            <Edge From="50" To="51" Label="Source1" />
            <Edge From="51" To="52" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>map_arg_vals</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>bool_values</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Laser_On</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>2</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Hardware_Triggered_On</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>4</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Logging_On</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>8</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Verbose_On</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>16</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Add" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>Bool_Vals_Byte</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="24" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="6" To="9" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="11" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="24" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="12" To="15" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="17" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source2" />
                  <Edge From="17" To="24" Label="Source3" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="18" To="21" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="23" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source2" />
                  <Edge From="23" To="24" Label="Source4" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>conditionNum</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Condition_Num_Channel</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>conditionNum</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Condition_Num</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>255</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Condition_Num_Byte</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>laserPower_mW</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Laser_Power_Channel</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>LaserPower_mW</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Laser_Power_mW</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Laser_Power_Float</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>startDelay</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Start_Delay_Channel</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>startDelay</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Start_Delay_Seconds</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Start_Delay_Float</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>stimDuration</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Stim_Duration_Channel</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>StimDuration</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Stim_Duration_Seconds</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Stim_Duration_Float</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Trial_Command" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Gen_Tuple</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Trial_Command" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ByteProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Arg_Keys_Byte</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Bool_Vals_Byte</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Condition_Num_Byte</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Stim_Duration_Float</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Laser_Power_Float</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start_Delay_Float</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Zapit_Byte_Tuple</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Server_Message</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="8" Label="Source1" />
            <Edge From="2" To="8" Label="Source2" />
            <Edge From="3" To="8" Label="Source3" />
            <Edge From="4" To="8" Label="Source4" />
            <Edge From="5" To="8" Label="Source5" />
            <Edge From="6" To="8" Label="Source6" />
            <Edge From="7" To="8" Label="Source7" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="51" Label="Source1" />
      <Edge From="50" To="51" Label="Source2" />
      <Edge From="51" To="52" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>