<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:p1="clr-namespace:System.Windows.Forms;assembly=System.Windows.Forms, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089"
                 xmlns:p2="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Render_Loop</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>1</gl:Width>
                <gl:Height>1</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Black</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Minimized</gl:WindowState>
                <gl:DisplayDevice>Primary</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT0S</gl:DueTime>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>../Params/Rig_Params.csv</io:FileName>
        <io:ListSeparator />
        <io:SkipRows>0</io:SkipRows>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Beh</ipy:Name>
        <ipy:Script>@returns(str)
def process(value):
  len_output = 4
  param_spacing = 2
  param = 'Harp_Beh_Port' 
  start = value.find(param) + len(param) + param_spacing
  end = start + len_output
  return(value[start:end])</ipy:Script>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="PortName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>HarpBeh</Name>
        <Description>Workflows to connect and interact with Harp Behaviour Module

Will initialise device and create subjects:

BehModuleInput -- Messagebytes -- output from devicecommand node to issue outputs to harp board

BehBytes -- bytesarray -- messagebytes output to be written to .bin file with MatrixWriter node

BeamXbool -- bool -- readout  for hi/lo state of photogate/lickspout connected to ethernet breakout ports
</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Address>32</harp:Address>
              <harp:PayloadType>U8</harp:PayloadType>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>BehModule</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ByteProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>BehBytes</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BehBytes</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>C:\bonsai\bonsaiprotocols\base4harp\Beh_Hit_Data.bin</dsp:Path>
                <dsp:Suffix>FileCount</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BehModule</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
              <Property Name="True_Harp" />
              <Property Name="Emulate" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Device_Emulator</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="True_Harp" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Emulate" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Emulate" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Poke_0_Emulator</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Emulate" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>false</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Filter" />
                        </Expression>
                        <Expression xsi:type="PropertySource" TypeArguments="wie:KeyDown,p1:Keys">
                          <MemberName>Filter</MemberName>
                          <Value>D0</Value>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Filter" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="SuppressRepetitions" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="wie:KeyDown">
                            <wie:Filter>D0</wie:Filter>
                            <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>false</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Filter" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="wie:KeyUp">
                            <wie:Filter>D0</wie:Filter>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>true</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SubscribeWhen" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="12" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="3" To="8" Label="Source1" />
                        <Edge From="4" To="6" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="11" Label="Source2" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Emulate" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Poke_1_Emulator</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Emulate" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>false</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Filter" />
                        </Expression>
                        <Expression xsi:type="PropertySource" TypeArguments="wie:KeyDown,p1:Keys">
                          <MemberName>Filter</MemberName>
                          <Value>D1</Value>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Filter" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="SuppressRepetitions" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="wie:KeyDown">
                            <wie:Filter>D1</wie:Filter>
                            <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>false</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Filter" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="wie:KeyUp">
                            <wie:Filter>D1</wie:Filter>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>true</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SubscribeWhen" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="12" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="3" To="8" Label="Source1" />
                        <Edge From="4" To="6" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="11" Label="Source2" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Emulate" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Poke_2_Emulator</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Emulate" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>false</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Filter" />
                        </Expression>
                        <Expression xsi:type="PropertySource" TypeArguments="wie:KeyDown,p1:Keys">
                          <MemberName>Filter</MemberName>
                          <Value>D2</Value>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Filter" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="SuppressRepetitions" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="wie:KeyDown">
                            <wie:Filter>D2</wie:Filter>
                            <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>false</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Filter" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="wie:KeyUp">
                            <wie:Filter>D2</wie:Filter>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>true</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SubscribeWhen" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="12" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="3" To="8" Label="Source1" />
                        <Edge From="4" To="6" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="11" Label="Source2" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="PortName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:Device">
                      <harp:DeviceState>Active</harp:DeviceState>
                      <harp:DumpRegisters>true</harp:DumpRegisters>
                      <harp:LedState>On</harp:LedState>
                      <harp:VisualIndicators>On</harp:VisualIndicators>
                      <harp:Heartbeat>Disable</harp:Heartbeat>
                      <harp:IgnoreErrors>false</harp:IgnoreErrors>
                      <harp:PortName>COM4</harp:PortName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:DelaySubscription">
                      <gl:DueTime>PT1S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="p2:BehaviorEvent">
                    <p2:Type>Input</p2:Type>
                    <p2:Mask>Port0</p2:Mask>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>Beam0Bool</Name>
                  </Expression>
                  <Expression xsi:type="p2:BehaviorEvent">
                    <p2:Type>Input</p2:Type>
                    <p2:Mask>Port1</p2:Mask>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>Beam1Bool</Name>
                  </Expression>
                  <Expression xsi:type="p2:BehaviorEvent">
                    <p2:Type>Input</p2:Type>
                    <p2:Mask>Port2</p2:Mask>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>Beam2Bool</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>MessageBytes</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BehBytes</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="15" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="4" To="7" Label="Source1" />
                  <Edge From="4" To="9" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="17" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="20" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="23" Label="Source2" />
                  <Edge From="11" To="13" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="15" To="19" Label="Source1" />
                  <Edge From="15" To="22" Label="Source1" />
                  <Edge From="15" To="25" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT1S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="p2:BehaviorCommand">
        <p2:Type>SetOutput</p2:Type>
        <p2:Mask>Poke1Valve</p2:Mask>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BehModule</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT10S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="p2:BehaviorCommand">
        <p2:Type>ClearOutput</p2:Type>
        <p2:Mask>Poke1Valve</p2:Mask>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BehModule</Name>
      </Expression>
      <Expression xsi:type="p2:BehaviorCommand">
        <p2:Type>SetOutput</p2:Type>
        <p2:Mask>Poke2Valve</p2:Mask>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BehModule</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT10S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="p2:BehaviorCommand">
        <p2:Type>ClearOutput</p2:Type>
        <p2:Mask>Poke2Valve</p2:Mask>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BehModule</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="5" To="11" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="16" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>