WorkflowBuilder(Version=2.7.0)
GroupWorkflow CameraStreaming
    Bonsai.Osc.CreateTcpServer(Name=Emitter, Port=1234, NoDelay=false, AllowNatTraversal=false)

    SubscribeSubject Video_File_Name
    -> PropertyMapping(FileName) => #2
    Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
    -> DelaySubscription(DueTime=PT1S)
    -> Retry => #5
    #5, #2 -> Bonsai.Vision.VideoWriter
      FileName=../../Data/TEST/AMP_MOD_DISC_TEST_2022_11_30/Video_data.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=true
      FourCC=FMP4
      FrameRate=60
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    -> WorkflowOutput
    #5 -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #9
    SubscribeSubject Video_Timestamps_File_Name
    -> PropertyMapping(FileName) => #11
    #9, #11 -> Bonsai.IO.TextWriter(FileName=../../Data/TEST/AMP_MOD_DISC_TEST_2022_11_30/Video_timestamps.txt, Suffix=Timestamp, Buffered=true, Overwrite=false, Append=false)
    #5 -> Bonsai.Dsp.ConvertToArray(Depth=nil)
    -> Bonsai.Osc.SendMessage(Connection=Emitter, Address=/tcpimage)

GroupWorkflow Render_Loop
    Bonsai.Shaders.CreateWindow
      Width=1
      Height=1
      VSync=On
      SwapSync=false
      ClearColor=Black
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Minimized
      DisplayDevice=Primary
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false

    Bonsai.Shaders.Timer(DueTime=PT0S)

Bonsai.IO.CsvReader(FileName=../../Params/Rig_Params.csv, ListSeparator="", SkipRows=0) => #2
-> Bonsai.Scripting.IronPython.PythonTransform Room_ID
  Script:
    @returns(int)
    def process(value):
      len_output = 3
      param_spacing = 2
      param = 'Room_ID'
      start = value.find(param) + len(param) + param_spacing
      end = start + len_output
      return(int(value[start:end]))
-> PropertyMapping(Room_ID) => #4
#2 -> Bonsai.Scripting.IronPython.PythonTransform Rig_ID
  Script:
    @returns(int)
    def process(value):
      len_output = 2
      param_spacing = 2
      param = 'Rig_ID'
      start = value.find(param) + len(param) + param_spacing
      end = start + len_output
      return(int(value[start:end]))
-> PropertyMapping(Rig_ID) => #6
#2 -> Bonsai.Scripting.IronPython.PythonTransform Left_Valve
  Script:
    @returns(int)
    def process(value):
      len_output = 2
      param_spacing = 2
      param = 'Left_Valve_Time'
      start = value.find(param) + len(param) + param_spacing
      end = start + len_output
      return(int(value[start:end]))
-> PropertyMapping("LeftValveTime (ms)") => #8
#2 -> Bonsai.Scripting.IronPython.PythonTransform Right_Valve
  Script:
    @returns(int)
    def process(value):
      len_output = 2
      param_spacing = 2
      param = 'Right_Valve_Time'
      start = value.find(param) + len(param) + param_spacing
      end = start + len_output
      return(int(value[start:end]))
-> PropertyMapping("RightValveTime (ms)") => #10
#4, #6, #8, #10 -> GroupWorkflow DynamicVariables
    ExternalizedMapping(Value(DisplayName="RightValveTime (ms)"))
    -> FloatProperty(Value=40)
    -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject RightValveTime

    ExternalizedMapping(Value(DisplayName="LeftValveTime (ms)"))
    -> FloatProperty(Value=40)
    -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject LeftValveTime

    ExternalizedMapping(Value(DisplayName=Room_ID))
    -> IntProperty(Value=404)
    -> BehaviorSubject Room_ID

    ExternalizedMapping(Value(DisplayName=Rig_ID))
    -> IntProperty(Value=40)
    -> BehaviorSubject Rig_ID
#2 -> Bonsai.Scripting.IronPython.PythonTransform Beh
  Script:
    @returns(str)
    def process(value):
      len_output = 4
      param_spacing = 2
      param = 'Harp_Beh_Port'
      start = value.find(param) + len(param) + param_spacing
      end = start + len_output
      return(value[start:end])
-> PropertyMapping(PortName)
-> GroupWorkflow HarpBeh
  Description:
    Workflows to connect and interact with Harp Behaviour Module

    Will initialise device and create subjects:

    BehModuleInput -- Messagebytes -- output from devicecommand node to issue outputs to harp board

    BehBytes -- bytesarray -- messagebytes output to be written to .bin file with MatrixWriter node

    BeamXbool -- bool -- readout  for hi/lo state of photogate/lickspout connected to ethernet breakout ports
  Workflow
    BooleanProperty(Value=false)
    -> Bonsai.Harp.Format(MessageType=Write, Address=32, PayloadType=U8)
    -> BehaviorSubject BehModule

    ByteProperty(Value=0)
    -> ToArray
    -> BehaviorSubject BehBytes

    SubscribeSubject BehBytes
    -> Bonsai.Dsp.MatrixWriter(Path=C:\bonsai\bonsaiprotocols\base4harp\Beh_Hit_Data.bin, Suffix=FileCount, Overwrite=false, Layout=ColumnMajor)

    SubscribeSubject BehModule
    -> Skip(Count=1) => #9
    ExternalizedMapping(PortName, True_Harp, Emulate) => #10
    #9, #10 -> GroupWorkflow Device_Emulator
        ExternalizedMapping(Value(DisplayName=True_Harp))
        -> BooleanProperty(Value=false)
        -> Condition => #2
            WorkflowInput Source1
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=Emulate))
        -> BooleanProperty(Value=true) => #4
        -> PropertyMapping(Emulate)
        -> GroupWorkflow Poke_0_Emulator => #6
            ExternalizedMapping(Value(DisplayName=Emulate))
            -> BooleanProperty(Value=true) => #1
            ExternalizedMapping(Value(DisplayName=Filter))
            -> PropertySource<Bonsai.Windows.Input.KeyDown,System.Windows.Forms.Keys>(MemberName=Filter, Value=D0) => #3
            -> PropertyMapping(Filter) => #4
            ExternalizedMapping(SuppressRepetitions) => #5
            #4, #5 -> Bonsai.Windows.Input.KeyDown(Filter=D0, SuppressRepetitions=true)
            -> BooleanProperty(Value=false) => #7
            #3 -> PropertyMapping(Filter)
            -> Bonsai.Windows.Input.KeyUp(Filter=D0)
            -> BooleanProperty(Value=true) => #10
            #10, #7 -> Merge => #11
            #11, #1 -> SubscribeWhen
            -> WorkflowOutput
        #4 -> PropertyMapping(Emulate)
        -> GroupWorkflow Poke_1_Emulator => #8
            ExternalizedMapping(Value(DisplayName=Emulate))
            -> BooleanProperty(Value=true) => #1
            ExternalizedMapping(Value(DisplayName=Filter))
            -> PropertySource<Bonsai.Windows.Input.KeyDown,System.Windows.Forms.Keys>(MemberName=Filter, Value=D1) => #3
            -> PropertyMapping(Filter) => #4
            ExternalizedMapping(SuppressRepetitions) => #5
            #4, #5 -> Bonsai.Windows.Input.KeyDown(Filter=D1, SuppressRepetitions=true)
            -> BooleanProperty(Value=false) => #7
            #3 -> PropertyMapping(Filter)
            -> Bonsai.Windows.Input.KeyUp(Filter=D1)
            -> BooleanProperty(Value=true) => #10
            #10, #7 -> Merge => #11
            #11, #1 -> SubscribeWhen
            -> WorkflowOutput
        #4 -> PropertyMapping(Emulate)
        -> GroupWorkflow Poke_2_Emulator => #10
            ExternalizedMapping(Value(DisplayName=Emulate))
            -> BooleanProperty(Value=true) => #1
            ExternalizedMapping(Value(DisplayName=Filter))
            -> PropertySource<Bonsai.Windows.Input.KeyDown,System.Windows.Forms.Keys>(MemberName=Filter, Value=D2) => #3
            -> PropertyMapping(Filter) => #4
            ExternalizedMapping(SuppressRepetitions) => #5
            #4, #5 -> Bonsai.Windows.Input.KeyDown(Filter=D2, SuppressRepetitions=true)
            -> BooleanProperty(Value=false) => #7
            #3 -> PropertyMapping(Filter)
            -> Bonsai.Windows.Input.KeyUp(Filter=D2)
            -> BooleanProperty(Value=true) => #10
            #10, #7 -> Merge => #11
            #11, #1 -> SubscribeWhen
            -> WorkflowOutput
        WorkflowInput Source1 => #11
        ExternalizedMapping(PortName) => #12
        #11, #12 -> Bonsai.Harp.Device(PortName="NaN,", DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false)
        -> Bonsai.Shaders.DelaySubscription(DueTime=PT1S) => #14
        #14, #2 -> SubscribeWhen => #15
        -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port0) => #16
        #16, #6 -> Merge
        -> BehaviorSubject Beam0Bool
        #15 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port1) => #19
        #19, #8 -> Merge
        -> BehaviorSubject Beam1Bool
        #15 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port2) => #22
        #22, #10 -> Merge
        -> BehaviorSubject Beam2Bool
        #15 -> MemberSelector(Selector=MessageBytes)
        -> MulticastSubject BehBytes
#2 -> Bonsai.Scripting.IronPython.PythonTransform Sound_Card
  Script:
    @returns(str)
    def process(value):
      len_output = 4
      param_spacing = 2
      param = 'Sound_Card_Port'
      start = value.find(param) + len(param) + param_spacing
      end = start + len_output
      return(value[start:end])
-> PropertyMapping(PortName)
-> GroupWorkflow HarpSoundCard
    SubscribeSubject PlaySound
    -> Skip(Count=1) => #1
    SubscribeSubject Soundcard?
    -> Condition => #3
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=true))
        -> WorkflowOutput
    SubscribeSubject SoundIndex
    -> Skip(Count=1)
    -> Timestamp
    -> MemberSelector(Selector=Timestamp) => #7
    SubscribeSubject Freq
    -> Skip(Count=1)
    -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        @returns(float)
        def process(value):
          return 2**value
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: uint16(it)
    -> Bonsai.Harp.Format(MessageType=Write, Address=32, PayloadType=U16) => #12
    SubscribeSubject StopSound
    -> IntProperty(Value=3)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: byte(it)
    -> Bonsai.Harp.Format(MessageType=Write, Address=33, PayloadType=U8) => #16
    SubscribeSubject Volume
    -> Skip(Count=1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: uint16(it)
    -> Sink
        WorkflowInput Source1
        -> Bonsai.Harp.Format(MessageType=Write, Address=34, PayloadType=U8)
        -> WorkflowOutput
    -> Bonsai.Harp.Format(MessageType=Write, Address=35, PayloadType=U8) => #21
    #12, #16, #21 -> Merge => #22
    #1, #22 -> Merge => #23
    ExternalizedMapping(PortName) => #24
    #23, #24 -> Bonsai.Harp.Device(PortName=COM6, DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false)
    -> Bonsai.Shaders.DelaySubscription(DueTime=PT1S) => #26
    #26, #3 -> SubscribeWhen
    #23 -> Timestamp
    -> MemberSelector(Selector=Timestamp) => #29
    #29, #7 -> Zip
    -> Subtract

    IntProperty(Value=0)
    -> BehaviorSubject SoundIndex

    SubscribeSubject SoundIndex
    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U16, Payload=0)
    -> BehaviorSubject PlaySound

    ExternalizedMapping(Value(DisplayName=Soundcard?))
    -> BooleanProperty(Value=false)
    -> BehaviorSubject Soundcard?

    FloatProperty(Value=11.5)
    -> BehaviorSubject Freq

    IntProperty(Value=1000)
    -> BehaviorSubject Volume

    SubscribeSubject Freq
    -> BehaviorSubject PlayTone

    IntProperty(Value=3)
    -> BehaviorSubject StopSound

ExternalizedMapping("ResponseWindow (s)", "ITI (s)", Visualizer_Window_Size, "TimeoutDuration (s)", Anti_Bias, Nb_Of_Amps)
-> GroupWorkflow Task_Params
    ExternalizedMapping(Value(DisplayName="ResponseWindow (s)"))
    -> FloatProperty(Value=3)
    -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromSeconds
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject ResponseWindow

    ExternalizedMapping(Value(DisplayName="ITI (s)"))
    -> FloatProperty(Value=1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromSeconds
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject ITI

    ExternalizedMapping(Value(DisplayName=Visualizer_Window_Size))
    -> IntProperty(Value=20)
    -> BehaviorSubject Visualizer_Window_Size

    ExternalizedMapping(Value(DisplayName="TimeoutDuration (s)"))
    -> FloatProperty(Value=1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromSeconds
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject TimeoutDuration

    ExternalizedMapping(Value(DisplayName=Nb_Of_Amps))
    -> IntProperty(Value=2)
    -> BehaviorSubject Nb_Of_Amps

    ExternalizedMapping(Value(DisplayName=Anti_Bias))
    -> BooleanProperty(Value=true)
    -> BehaviorSubject Anti_Bias

GroupWorkflow Task_Variables
    BooleanProperty(Value=false)
    -> BehaviorSubject Correct

    IntProperty(Value=0)
    -> PublishSubject TrialOutcome

    IntProperty(Value=0)
    -> BehaviorSubject FirstLick

    Bonsai.Shaders.Input.KeyDown(Key=End, Modifiers=nil)
    -> BehaviorSubject ExpEnd

    BooleanProperty(Value=false)
    -> BehaviorSubject TrialEnd

    FloatProperty(Value=0)
    -> BehaviorSubject Tone

    StringProperty(Value=QP04)
    -> BehaviorSubject MouseID

    ExternalizedMapping(Value(DisplayName="ToneDur (ms)"))
    -> FloatProperty(Value=300)
    -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject ToneDur

    ExternalizedMapping(Value(DisplayName="GoCueDur (ms)"))
    -> FloatProperty(Value=300)
    -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject GoCueDur

    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    IntProperty(Value=0)
    -> BehaviorSubject "RewSide "

    IntProperty(Value=0)
    -> BehaviorSubject DelayedReward

    IntProperty(Value=0)
    -> BehaviorSubject Reward

    BooleanProperty(Value=false)
    -> BehaviorSubject AbortTrial

    IntProperty(Value=0)
    -> BehaviorSubject Attempts

    IntProperty(Value=0)
    -> BehaviorSubject CorrectCount

    IntProperty(Value=0)
    -> BehaviorSubject RewardCount

    DoubleProperty(Value=0)
    -> BehaviorSubject Percent_Right_Licks

    IntProperty(Value=0)
    -> BehaviorSubject Time

    IntProperty(Value=0)
    -> BehaviorSubject "Response_Latency (ms)"

    ExternalizedMapping(Value(DisplayName=Boundary))
    -> FloatProperty(Value=77.5)
    -> BehaviorSubject Boundary

    IntProperty(Value=3)
    -> BehaviorSubject StimID

    ExternalizedMapping(Value(DisplayName=WN_Dur))
    -> FloatProperty(Value=400)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject WNDur

    IntProperty(Value=0)
    -> BehaviorSubject WN_Amp

SubscribeSubject ExpEnd => #21
SubscribeSubject ITI
-> PropertyMapping(DueTime)
-> Timer(DueTime=PT1S, Period=PT0S)
-> Sink PrepTrial
    WorkflowInput Source1
    -> Sink SetSpouts
        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject Beam1Bool

        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject Beam2Bool

        Disable SubscribeSubject Beam0Bool
        -> Disable Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> Disable BooleanProperty(Value=true)
        -> Disable MulticastSubject Beam0Bool
    -> Sink ResetAttempts
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> MulticastSubject Attempts
        -> WorkflowOutput
    -> Sink CheckValvesClosed
        WorkflowInput Source1 => #0
        -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve)
        -> MulticastSubject BehModule => #2
        #0 -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve)
        -> MulticastSubject BehModule => #4
        #2, #4 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> Sink "TrialEnd = False"
        WorkflowInput Source1
        -> BooleanProperty(Value=false)
        -> MulticastSubject TrialEnd
        -> WorkflowOutput
    -> WorkflowOutput
-> SelectMany Trial
    WorkflowInput Source1
    -> SelectMany WN
        SubscribeSubject Anti_Bias => #0
        -> Condition Off
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany Random_Amp => #2
            SubscribeSubject Nb_Of_Amps
            -> PropertyMapping(Upper)
            -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=2)
            -> Bonsai.Numerics.Distributions.Sample
            -> Take(Count=1) => #4
            -> Condition
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> SelectMany 60 => #6
                SubscribeSubject StimID
                -> PropertyMapping(Value) => #1
                SubscribeSubject WNDur
                -> PropertyMapping(DueTime) => #3
                WorkflowInput Source1 => #4
                ExternalizedMapping(Value(DisplayName=Low_Amp))
                -> IntProperty(Value=60)
                -> MulticastSubject WN_Amp
                -> PropertyMapping(SoundLevel) => #8
                #4, #8 -> Sink SetLevel => #9
                    ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                    WorkflowInput Source1 => #1
                    #1, #0 -> IntProperty(Value=60)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: (it-107.54)/-0.0764
                    -> PropertyMapping(Value)
                    -> IntProperty(Value=622)
                    -> Sink Left
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> Sink Right
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> WorkflowOutput
                #9, #1 -> IntProperty(Value=3)
                -> MulticastSubject SoundIndex => #11
                #11, #3 -> Delay(DueTime=PT0.4S)
                -> IntProperty(Value=30)
                -> MulticastSubject SoundIndex
                -> Take(Count=1)
                -> WorkflowOutput
            #4 -> Condition
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=5))
                -> WorkflowOutput
            -> SelectMany 70 => #8
                SubscribeSubject StimID
                -> PropertyMapping(Value) => #1
                SubscribeSubject WNDur
                -> PropertyMapping(DueTime) => #3
                WorkflowInput Source1 => #4
                ExternalizedMapping(Value(DisplayName=Low_Amp))
                -> IntProperty(Value=70)
                -> MulticastSubject WN_Amp
                -> PropertyMapping(SoundLevel) => #8
                #4, #8 -> Sink SetLevel => #9
                    ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                    WorkflowInput Source1 => #1
                    #1, #0 -> IntProperty(Value=60)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: (it-107.54)/-0.0764
                    -> PropertyMapping(Value)
                    -> IntProperty(Value=622)
                    -> Sink Left
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> Sink Right
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> WorkflowOutput
                #9, #1 -> IntProperty(Value=3)
                -> MulticastSubject SoundIndex => #11
                #11, #3 -> Delay(DueTime=PT0.4S)
                -> IntProperty(Value=30)
                -> MulticastSubject SoundIndex
                -> Take(Count=1)
                -> WorkflowOutput
            #4 -> Condition
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=3))
                -> WorkflowOutput
            -> SelectMany 65 => #10
                SubscribeSubject StimID
                -> PropertyMapping(Value) => #1
                SubscribeSubject WNDur
                -> PropertyMapping(DueTime) => #3
                WorkflowInput Source1 => #4
                ExternalizedMapping(Value(DisplayName=Low_Amp))
                -> IntProperty(Value=65)
                -> MulticastSubject WN_Amp
                -> PropertyMapping(SoundLevel) => #8
                #4, #8 -> Sink SetLevel => #9
                    ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                    WorkflowInput Source1 => #1
                    #1, #0 -> IntProperty(Value=60)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: (it-107.54)/-0.0764
                    -> PropertyMapping(Value)
                    -> IntProperty(Value=622)
                    -> Sink Left
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> Sink Right
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> WorkflowOutput
                #9, #1 -> IntProperty(Value=3)
                -> MulticastSubject SoundIndex => #11
                #11, #3 -> Delay(DueTime=PT0.4S)
                -> IntProperty(Value=30)
                -> MulticastSubject SoundIndex
                -> Take(Count=1)
                -> WorkflowOutput
            #4 -> Condition
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=7))
                -> WorkflowOutput
            -> SelectMany 75 => #12
                SubscribeSubject StimID
                -> PropertyMapping(Value) => #1
                SubscribeSubject WNDur
                -> PropertyMapping(DueTime) => #3
                WorkflowInput Source1 => #4
                ExternalizedMapping(Value(DisplayName=Low_Amp))
                -> IntProperty(Value=75)
                -> MulticastSubject WN_Amp
                -> PropertyMapping(SoundLevel) => #8
                #4, #8 -> Sink SetLevel => #9
                    ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                    WorkflowInput Source1 => #1
                    #1, #0 -> IntProperty(Value=60)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: (it-107.54)/-0.0764
                    -> PropertyMapping(Value)
                    -> IntProperty(Value=622)
                    -> Sink Left
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> Sink Right
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> WorkflowOutput
                #9, #1 -> IntProperty(Value=3)
                -> MulticastSubject SoundIndex => #11
                #11, #3 -> Delay(DueTime=PT0.4S)
                -> IntProperty(Value=30)
                -> MulticastSubject SoundIndex
                -> Take(Count=1)
                -> WorkflowOutput
            #4 -> Condition
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=6))
                -> WorkflowOutput
            -> SelectMany 85 => #14
                SubscribeSubject StimID
                -> PropertyMapping(Value) => #1
                SubscribeSubject WNDur
                -> PropertyMapping(DueTime) => #3
                WorkflowInput Source1 => #4
                ExternalizedMapping(Value(DisplayName=Low_Amp))
                -> IntProperty(Value=85)
                -> MulticastSubject WN_Amp
                -> PropertyMapping(SoundLevel) => #8
                #4, #8 -> Sink SetLevel => #9
                    ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                    WorkflowInput Source1 => #1
                    #1, #0 -> IntProperty(Value=60)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: (it-107.54)/-0.0764
                    -> PropertyMapping(Value)
                    -> IntProperty(Value=622)
                    -> Sink Left
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> Sink Right
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> WorkflowOutput
                #9, #1 -> IntProperty(Value=3)
                -> MulticastSubject SoundIndex => #11
                #11, #3 -> Delay(DueTime=PT0.4S)
                -> IntProperty(Value=30)
                -> MulticastSubject SoundIndex
                -> Take(Count=1)
                -> WorkflowOutput
            #4 -> Condition
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=4))
                -> WorkflowOutput
            -> SelectMany 90 => #16
                SubscribeSubject StimID
                -> PropertyMapping(Value) => #1
                SubscribeSubject WNDur
                -> PropertyMapping(DueTime) => #3
                WorkflowInput Source1 => #4
                ExternalizedMapping(Value(DisplayName=Low_Amp))
                -> IntProperty(Value=90)
                -> MulticastSubject WN_Amp
                -> PropertyMapping(SoundLevel) => #8
                #4, #8 -> Sink SetLevel => #9
                    ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                    WorkflowInput Source1 => #1
                    #1, #0 -> IntProperty(Value=60)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: (it-107.54)/-0.0764
                    -> PropertyMapping(Value)
                    -> IntProperty(Value=622)
                    -> Sink Left
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> Sink Right
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> WorkflowOutput
                #9, #1 -> IntProperty(Value=3)
                -> MulticastSubject SoundIndex => #11
                #11, #3 -> Delay(DueTime=PT0.4S)
                -> IntProperty(Value=30)
                -> MulticastSubject SoundIndex
                -> Take(Count=1)
                -> WorkflowOutput
            #4 -> Condition
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            -> SelectMany 95 => #18
                SubscribeSubject StimID
                -> PropertyMapping(Value) => #1
                SubscribeSubject WNDur
                -> PropertyMapping(DueTime) => #3
                WorkflowInput Source1 => #4
                ExternalizedMapping(Value(DisplayName=Low_Amp))
                -> IntProperty(Value=95)
                -> MulticastSubject WN_Amp
                -> PropertyMapping(SoundLevel) => #8
                #4, #8 -> Sink SetLevel => #9
                    ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                    WorkflowInput Source1 => #1
                    #1, #0 -> IntProperty(Value=60)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: (it-107.54)/-0.0764
                    -> PropertyMapping(Value)
                    -> IntProperty(Value=622)
                    -> Sink Left
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> Sink Right
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> WorkflowOutput
                #9, #1 -> IntProperty(Value=3)
                -> MulticastSubject SoundIndex => #11
                #11, #3 -> Delay(DueTime=PT0.4S)
                -> IntProperty(Value=30)
                -> MulticastSubject SoundIndex
                -> Take(Count=1)
                -> WorkflowOutput
            #4 -> Condition
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=8))
                -> WorkflowOutput
            -> SelectMany 80 => #20
                SubscribeSubject StimID
                -> PropertyMapping(Value) => #1
                SubscribeSubject WNDur
                -> PropertyMapping(DueTime) => #3
                WorkflowInput Source1 => #4
                ExternalizedMapping(Value(DisplayName=Low_Amp))
                -> IntProperty(Value=80)
                -> MulticastSubject WN_Amp
                -> PropertyMapping(SoundLevel) => #8
                #4, #8 -> Sink SetLevel => #9
                    ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                    WorkflowInput Source1 => #1
                    #1, #0 -> IntProperty(Value=60)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: (it-107.54)/-0.0764
                    -> PropertyMapping(Value)
                    -> IntProperty(Value=622)
                    -> Sink Left
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> Sink Right
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> WorkflowOutput
                #9, #1 -> IntProperty(Value=3)
                -> MulticastSubject SoundIndex => #11
                #11, #3 -> Delay(DueTime=PT0.4S)
                -> IntProperty(Value=30)
                -> MulticastSubject SoundIndex
                -> Take(Count=1)
                -> WorkflowOutput
            #6, #10, #8, #12, #20, #14, #16, #18 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Condition On
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany Anti_Bias => #4
            SubscribeSubject TrialNumber => #0
            -> Condition Wait
                WorkflowInput Source1 => #0
                SubscribeSubject Anti_Bias_Window
                -> PropertyMapping(Value) => #2
                #0, #2 -> LessThan(Operand=IntProperty(Value=30))
                -> WorkflowOutput
            -> SelectMany Random_Amp => #2
                SubscribeSubject Nb_Of_Amps
                -> PropertyMapping(Upper)
                -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=2)
                -> Bonsai.Numerics.Distributions.Sample
                -> Take(Count=1) => #4
                -> Condition
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> SelectMany 60 => #6
                    SubscribeSubject StimID
                    -> PropertyMapping(Value) => #1
                    SubscribeSubject WNDur
                    -> PropertyMapping(DueTime) => #3
                    WorkflowInput Source1 => #4
                    ExternalizedMapping(Value(DisplayName=Low_Amp))
                    -> IntProperty(Value=60)
                    -> MulticastSubject WN_Amp
                    -> PropertyMapping(SoundLevel) => #8
                    #4, #8 -> Sink SetLevel => #9
                        ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                        WorkflowInput Source1 => #1
                        #1, #0 -> IntProperty(Value=60)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=622)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    #9, #1 -> IntProperty(Value=3)
                    -> MulticastSubject SoundIndex => #11
                    #11, #3 -> Delay(DueTime=PT0.4S)
                    -> IntProperty(Value=30)
                    -> MulticastSubject SoundIndex
                    -> Take(Count=1)
                    -> WorkflowOutput
                #4 -> Condition
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=5))
                    -> WorkflowOutput
                -> SelectMany 70 => #8
                    SubscribeSubject StimID
                    -> PropertyMapping(Value) => #1
                    SubscribeSubject WNDur
                    -> PropertyMapping(DueTime) => #3
                    WorkflowInput Source1 => #4
                    ExternalizedMapping(Value(DisplayName=Low_Amp))
                    -> IntProperty(Value=70)
                    -> MulticastSubject WN_Amp
                    -> PropertyMapping(SoundLevel) => #8
                    #4, #8 -> Sink SetLevel => #9
                        ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                        WorkflowInput Source1 => #1
                        #1, #0 -> IntProperty(Value=60)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=622)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    #9, #1 -> IntProperty(Value=3)
                    -> MulticastSubject SoundIndex => #11
                    #11, #3 -> Delay(DueTime=PT0.4S)
                    -> IntProperty(Value=30)
                    -> MulticastSubject SoundIndex
                    -> Take(Count=1)
                    -> WorkflowOutput
                #4 -> Condition
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=3))
                    -> WorkflowOutput
                -> SelectMany 65 => #10
                    SubscribeSubject StimID
                    -> PropertyMapping(Value) => #1
                    SubscribeSubject WNDur
                    -> PropertyMapping(DueTime) => #3
                    WorkflowInput Source1 => #4
                    ExternalizedMapping(Value(DisplayName=Low_Amp))
                    -> IntProperty(Value=65)
                    -> MulticastSubject WN_Amp
                    -> PropertyMapping(SoundLevel) => #8
                    #4, #8 -> Sink SetLevel => #9
                        ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                        WorkflowInput Source1 => #1
                        #1, #0 -> IntProperty(Value=60)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=622)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    #9, #1 -> IntProperty(Value=3)
                    -> MulticastSubject SoundIndex => #11
                    #11, #3 -> Delay(DueTime=PT0.4S)
                    -> IntProperty(Value=30)
                    -> MulticastSubject SoundIndex
                    -> Take(Count=1)
                    -> WorkflowOutput
                #4 -> Condition
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=7))
                    -> WorkflowOutput
                -> SelectMany 75 => #12
                    SubscribeSubject StimID
                    -> PropertyMapping(Value) => #1
                    SubscribeSubject WNDur
                    -> PropertyMapping(DueTime) => #3
                    WorkflowInput Source1 => #4
                    ExternalizedMapping(Value(DisplayName=Low_Amp))
                    -> IntProperty(Value=75)
                    -> MulticastSubject WN_Amp
                    -> PropertyMapping(SoundLevel) => #8
                    #4, #8 -> Sink SetLevel => #9
                        ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                        WorkflowInput Source1 => #1
                        #1, #0 -> IntProperty(Value=60)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=622)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    #9, #1 -> IntProperty(Value=3)
                    -> MulticastSubject SoundIndex => #11
                    #11, #3 -> Delay(DueTime=PT0.4S)
                    -> IntProperty(Value=30)
                    -> MulticastSubject SoundIndex
                    -> Take(Count=1)
                    -> WorkflowOutput
                #4 -> Condition
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=6))
                    -> WorkflowOutput
                -> SelectMany 85 => #14
                    SubscribeSubject StimID
                    -> PropertyMapping(Value) => #1
                    SubscribeSubject WNDur
                    -> PropertyMapping(DueTime) => #3
                    WorkflowInput Source1 => #4
                    ExternalizedMapping(Value(DisplayName=Low_Amp))
                    -> IntProperty(Value=85)
                    -> MulticastSubject WN_Amp
                    -> PropertyMapping(SoundLevel) => #8
                    #4, #8 -> Sink SetLevel => #9
                        ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                        WorkflowInput Source1 => #1
                        #1, #0 -> IntProperty(Value=60)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=622)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    #9, #1 -> IntProperty(Value=3)
                    -> MulticastSubject SoundIndex => #11
                    #11, #3 -> Delay(DueTime=PT0.4S)
                    -> IntProperty(Value=30)
                    -> MulticastSubject SoundIndex
                    -> Take(Count=1)
                    -> WorkflowOutput
                #4 -> Condition
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=4))
                    -> WorkflowOutput
                -> SelectMany 90 => #16
                    SubscribeSubject StimID
                    -> PropertyMapping(Value) => #1
                    SubscribeSubject WNDur
                    -> PropertyMapping(DueTime) => #3
                    WorkflowInput Source1 => #4
                    ExternalizedMapping(Value(DisplayName=Low_Amp))
                    -> IntProperty(Value=90)
                    -> MulticastSubject WN_Amp
                    -> PropertyMapping(SoundLevel) => #8
                    #4, #8 -> Sink SetLevel => #9
                        ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                        WorkflowInput Source1 => #1
                        #1, #0 -> IntProperty(Value=60)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=622)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    #9, #1 -> IntProperty(Value=3)
                    -> MulticastSubject SoundIndex => #11
                    #11, #3 -> Delay(DueTime=PT0.4S)
                    -> IntProperty(Value=30)
                    -> MulticastSubject SoundIndex
                    -> Take(Count=1)
                    -> WorkflowOutput
                #4 -> Condition
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=2))
                    -> WorkflowOutput
                -> SelectMany 95 => #18
                    SubscribeSubject StimID
                    -> PropertyMapping(Value) => #1
                    SubscribeSubject WNDur
                    -> PropertyMapping(DueTime) => #3
                    WorkflowInput Source1 => #4
                    ExternalizedMapping(Value(DisplayName=Low_Amp))
                    -> IntProperty(Value=95)
                    -> MulticastSubject WN_Amp
                    -> PropertyMapping(SoundLevel) => #8
                    #4, #8 -> Sink SetLevel => #9
                        ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                        WorkflowInput Source1 => #1
                        #1, #0 -> IntProperty(Value=95)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=164)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    #9, #1 -> IntProperty(Value=3)
                    -> MulticastSubject SoundIndex => #11
                    #11, #3 -> Delay(DueTime=PT0.4S)
                    -> IntProperty(Value=30)
                    -> MulticastSubject SoundIndex
                    -> Take(Count=1)
                    -> WorkflowOutput
                #4 -> Condition
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=8))
                    -> WorkflowOutput
                -> SelectMany 80 => #20
                    SubscribeSubject StimID
                    -> PropertyMapping(Value) => #1
                    SubscribeSubject WNDur
                    -> PropertyMapping(DueTime) => #3
                    WorkflowInput Source1 => #4
                    ExternalizedMapping(Value(DisplayName=Low_Amp))
                    -> IntProperty(Value=80)
                    -> MulticastSubject WN_Amp
                    -> PropertyMapping(SoundLevel) => #8
                    #4, #8 -> Sink SetLevel => #9
                        ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                        WorkflowInput Source1 => #1
                        #1, #0 -> IntProperty(Value=60)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=622)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    #9, #1 -> IntProperty(Value=3)
                    -> MulticastSubject SoundIndex => #11
                    #11, #3 -> Delay(DueTime=PT0.4S)
                    -> IntProperty(Value=30)
                    -> MulticastSubject SoundIndex
                    -> Take(Count=1)
                    -> WorkflowOutput
                #6, #10, #8, #12, #20, #14, #16, #18 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #0 -> Condition Start
                WorkflowInput Source1 => #0
                SubscribeSubject Anti_Bias_Window
                -> PropertyMapping(Value) => #2
                #0, #2 -> GreaterThanOrEqual(Operand=IntProperty(Value=30))
                -> WorkflowOutput
            -> SelectMany Anti_Bias_On => #4
                SubscribeSubject P_Right => #0
                Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample => #2
                #2, #0 -> Zip => #3
                -> LessThan
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany >77.5 => #6
                    SubscribeSubject Nb_Of_Amps
                    -> Divide(Operand=IntProperty(Value=2))
                    -> PropertyMapping(Upper)
                    -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=3)
                    -> Bonsai.Numerics.Distributions.Sample
                    -> Take(Count=1) => #5
                    -> Condition
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=3))
                        -> WorkflowOutput
                    -> SelectMany 85 => #7
                        SubscribeSubject StimID
                        -> PropertyMapping(Value) => #1
                        SubscribeSubject WNDur
                        -> PropertyMapping(DueTime) => #3
                        WorkflowInput Source1 => #4
                        ExternalizedMapping(Value(DisplayName=Low_Amp))
                        -> IntProperty(Value=85)
                        -> MulticastSubject WN_Amp
                        -> PropertyMapping(SoundLevel) => #8
                        #4, #8 -> Sink SetLevel => #9
                            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                            WorkflowInput Source1 => #1
                            #1, #0 -> IntProperty(Value=60)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: (it-107.54)/-0.0764
                            -> PropertyMapping(Value)
                            -> IntProperty(Value=622)
                            -> Sink Left
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> Sink Right
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> WorkflowOutput
                        #9, #1 -> IntProperty(Value=3)
                        -> MulticastSubject SoundIndex => #11
                        #11, #3 -> Delay(DueTime=PT0.4S)
                        -> IntProperty(Value=30)
                        -> MulticastSubject SoundIndex
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #5 -> Condition
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=2))
                        -> WorkflowOutput
                    -> SelectMany 90 => #9
                        SubscribeSubject StimID
                        -> PropertyMapping(Value) => #1
                        SubscribeSubject WNDur
                        -> PropertyMapping(DueTime) => #3
                        WorkflowInput Source1 => #4
                        ExternalizedMapping(Value(DisplayName=Low_Amp))
                        -> IntProperty(Value=90)
                        -> MulticastSubject WN_Amp
                        -> PropertyMapping(SoundLevel) => #8
                        #4, #8 -> Sink SetLevel => #9
                            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                            WorkflowInput Source1 => #1
                            #1, #0 -> IntProperty(Value=60)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: (it-107.54)/-0.0764
                            -> PropertyMapping(Value)
                            -> IntProperty(Value=622)
                            -> Sink Left
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> Sink Right
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> WorkflowOutput
                        #9, #1 -> IntProperty(Value=3)
                        -> MulticastSubject SoundIndex => #11
                        #11, #3 -> Delay(DueTime=PT0.4S)
                        -> IntProperty(Value=30)
                        -> MulticastSubject SoundIndex
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #5 -> Condition
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=1))
                        -> WorkflowOutput
                    -> SelectMany 95 => #11
                        SubscribeSubject StimID
                        -> PropertyMapping(Value) => #1
                        SubscribeSubject WNDur
                        -> PropertyMapping(DueTime) => #3
                        WorkflowInput Source1 => #4
                        ExternalizedMapping(Value(DisplayName=Low_Amp))
                        -> IntProperty(Value=95)
                        -> MulticastSubject WN_Amp
                        -> PropertyMapping(SoundLevel) => #8
                        #4, #8 -> Sink SetLevel => #9
                            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                            WorkflowInput Source1 => #1
                            #1, #0 -> IntProperty(Value=60)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: (it-107.54)/-0.0764
                            -> PropertyMapping(Value)
                            -> IntProperty(Value=622)
                            -> Sink Left
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> Sink Right
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> WorkflowOutput
                        #9, #1 -> IntProperty(Value=3)
                        -> MulticastSubject SoundIndex => #11
                        #11, #3 -> Delay(DueTime=PT0.4S)
                        -> IntProperty(Value=30)
                        -> MulticastSubject SoundIndex
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #5 -> Condition
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=4))
                        -> WorkflowOutput
                    -> SelectMany 80 => #13
                        SubscribeSubject StimID
                        -> PropertyMapping(Value) => #1
                        SubscribeSubject WNDur
                        -> PropertyMapping(DueTime) => #3
                        WorkflowInput Source1 => #4
                        ExternalizedMapping(Value(DisplayName=Low_Amp))
                        -> IntProperty(Value=80)
                        -> MulticastSubject WN_Amp
                        -> PropertyMapping(SoundLevel) => #8
                        #4, #8 -> Sink SetLevel => #9
                            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                            WorkflowInput Source1 => #1
                            #1, #0 -> IntProperty(Value=60)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: (it-107.54)/-0.0764
                            -> PropertyMapping(Value)
                            -> IntProperty(Value=622)
                            -> Sink Left
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> Sink Right
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> WorkflowOutput
                        #9, #1 -> IntProperty(Value=3)
                        -> MulticastSubject SoundIndex => #11
                        #11, #3 -> Delay(DueTime=PT0.4S)
                        -> IntProperty(Value=30)
                        -> MulticastSubject SoundIndex
                        -> Take(Count=1)
                        -> WorkflowOutput
                    Source4=#13, Source5=#7, Source6=#9, Source7=#11 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #3 -> GreaterThanOrEqual
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany <77.5 => #9
                    SubscribeSubject Nb_Of_Amps
                    -> Divide(Operand=IntProperty(Value=2))
                    -> PropertyMapping(Upper)
                    -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=3)
                    -> Bonsai.Numerics.Distributions.Sample
                    -> Take(Count=1) => #5
                    -> Condition
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=1))
                        -> WorkflowOutput
                    -> SelectMany 60 => #7
                        SubscribeSubject StimID
                        -> PropertyMapping(Value) => #1
                        SubscribeSubject WNDur
                        -> PropertyMapping(DueTime) => #3
                        WorkflowInput Source1 => #4
                        ExternalizedMapping(Value(DisplayName=Low_Amp))
                        -> IntProperty(Value=60)
                        -> MulticastSubject WN_Amp
                        -> PropertyMapping(SoundLevel) => #8
                        #4, #8 -> Sink SetLevel => #9
                            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                            WorkflowInput Source1 => #1
                            #1, #0 -> IntProperty(Value=60)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: (it-107.54)/-0.0764
                            -> PropertyMapping(Value)
                            -> IntProperty(Value=622)
                            -> Sink Left
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> Sink Right
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> WorkflowOutput
                        #9, #1 -> IntProperty(Value=3)
                        -> MulticastSubject SoundIndex => #11
                        #11, #3 -> Delay(DueTime=PT0.4S)
                        -> IntProperty(Value=30)
                        -> MulticastSubject SoundIndex
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #5 -> Condition
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=3))
                        -> WorkflowOutput
                    -> SelectMany 70 => #9
                        SubscribeSubject StimID
                        -> PropertyMapping(Value) => #1
                        SubscribeSubject WNDur
                        -> PropertyMapping(DueTime) => #3
                        WorkflowInput Source1 => #4
                        ExternalizedMapping(Value(DisplayName=Low_Amp))
                        -> IntProperty(Value=70)
                        -> MulticastSubject WN_Amp
                        -> PropertyMapping(SoundLevel) => #8
                        #4, #8 -> Sink SetLevel => #9
                            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                            WorkflowInput Source1 => #1
                            #1, #0 -> IntProperty(Value=60)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: (it-107.54)/-0.0764
                            -> PropertyMapping(Value)
                            -> IntProperty(Value=622)
                            -> Sink Left
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> Sink Right
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> WorkflowOutput
                        #9, #1 -> IntProperty(Value=3)
                        -> MulticastSubject SoundIndex => #11
                        #11, #3 -> Delay(DueTime=PT0.4S)
                        -> IntProperty(Value=30)
                        -> MulticastSubject SoundIndex
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #5 -> Condition
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=2))
                        -> WorkflowOutput
                    -> SelectMany 60 => #11
                        SubscribeSubject StimID
                        -> PropertyMapping(Value) => #1
                        SubscribeSubject WNDur
                        -> PropertyMapping(DueTime) => #3
                        WorkflowInput Source1 => #4
                        ExternalizedMapping(Value(DisplayName=Low_Amp))
                        -> IntProperty(Value=60)
                        -> MulticastSubject WN_Amp
                        -> PropertyMapping(SoundLevel) => #8
                        #4, #8 -> Sink SetLevel => #9
                            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                            WorkflowInput Source1 => #1
                            #1, #0 -> IntProperty(Value=60)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: (it-107.54)/-0.0764
                            -> PropertyMapping(Value)
                            -> IntProperty(Value=622)
                            -> Sink Left
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> Sink Right
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> WorkflowOutput
                        #9, #1 -> IntProperty(Value=3)
                        -> MulticastSubject SoundIndex => #11
                        #11, #3 -> Delay(DueTime=PT0.4S)
                        -> IntProperty(Value=30)
                        -> MulticastSubject SoundIndex
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #5 -> Condition
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=4))
                        -> WorkflowOutput
                    -> SelectMany 75 => #13
                        SubscribeSubject StimID
                        -> PropertyMapping(Value) => #1
                        SubscribeSubject WNDur
                        -> PropertyMapping(DueTime) => #3
                        WorkflowInput Source1 => #4
                        ExternalizedMapping(Value(DisplayName=Low_Amp))
                        -> IntProperty(Value=75)
                        -> MulticastSubject WN_Amp
                        -> PropertyMapping(SoundLevel) => #8
                        #4, #8 -> Sink SetLevel => #9
                            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                            WorkflowInput Source1 => #1
                            #1, #0 -> IntProperty(Value=60)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: (it-107.54)/-0.0764
                            -> PropertyMapping(Value)
                            -> IntProperty(Value=622)
                            -> Sink Left
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> Sink Right
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> WorkflowOutput
                        #9, #1 -> IntProperty(Value=3)
                        -> MulticastSubject SoundIndex => #11
                        #11, #3 -> Delay(DueTime=PT0.4S)
                        -> IntProperty(Value=30)
                        -> MulticastSubject SoundIndex
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #7, #11, #9, #13 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #6, #9 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #2, #4 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #2, #4 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany GoCue => #2
        WorkflowInput Source1 => #0
        SubscribeSubject GoCueDur
        -> PropertyMapping(DueTime) => #2
        #0, #2 -> Delay(DueTime=PT0.3S)
        -> WorkflowOutput
    -> SelectMany Response => #3
        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=1) => #2
        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=2) => #5
        #2, #5 -> Merge
        -> Take(Count=1)
        -> Sink ResetSpouts
            SubscribeSubject Beam1Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BooleanProperty(Value=true)
            -> MulticastSubject Beam1Bool

            SubscribeSubject Beam2Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BooleanProperty(Value=true)
            -> MulticastSubject Beam2Bool
        -> Sink RecordFirstLick
            WorkflowInput Source1
            -> MulticastSubject FirstLick
            -> WorkflowOutput
        -> Take(Count=1) => #10
        -> Equal(Operand=IntProperty(Value=1)) => #11
        SubscribeSubject CorrectCount => #12
        SubscribeSubject Boundary => #13
        -> PropertyMapping(Value) => #14
        SubscribeSubject WN_Amp => #15
        #15, #14 -> LessThan(Operand=IntProperty(Value=77)) => #16
        #11, #16 -> Zip
        -> LogicalAnd
        -> Condition => #19
            WorkflowInput Source1
            -> WorkflowOutput
        #13 -> PropertyMapping(Value) => #20
        #15, #20 -> GreaterThan(Operand=IntProperty(Value=77)) => #21
        #11, #21 -> Zip
        -> LogicalAnd
        -> Condition => #24
            WorkflowInput Source1
            -> WorkflowOutput
        #10 -> Equal(Operand=IntProperty(Value=2)) => #25
        #25, #21 -> Zip
        -> LogicalAnd
        -> Condition => #28
            WorkflowInput Source1
            -> WorkflowOutput
        #19, #28 -> Merge
        -> BooleanProperty(Value=true) => #30
        #25, #16 -> Zip
        -> LogicalAnd
        -> Condition => #33
            WorkflowInput Source1
            -> WorkflowOutput
        #24, #33 -> Merge
        -> BooleanProperty(Value=false) => #35
        #30, #35 -> Merge
        -> MulticastSubject Correct => #37
        -> Take(Count=1) => #38
        #37 -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1) => #40
        #40, #12 -> Zip
        -> Take(Count=1)
        -> Add => #43
        #37 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=0) => #45
        #45, #12 -> Zip
        -> Add => #47
        #43, #47 -> Merge
        -> MulticastSubject CorrectCount => #49
        #38, #49 -> Zip
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    -> BooleanProperty(Value=false)
    -> MulticastSubject AbortTrial => #5
    SubscribeSubject ResponseWindow
    -> PropertyMapping(DueTime) => #7
    #2, #7 -> Delay(DueTime=PT3S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject AbortTrial => #10
    #5, #10 -> Merge => #11
    -> Condition
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> SelectMany Feedback => #13
        SubscribeSubject Correct => #0
        -> Condition Yes
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany Success
            SubscribeSubject FirstLick => #0
            -> Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            -> SelectMany RewardRight => #2
                WorkflowInput Source1
                -> Disable SelectMany RewardTone(Description=SoundCard)
                    SubscribeSubject RewardDur
                    -> PropertyMapping(DueTime) => #1
                    WorkflowInput Source1 => #2
                    ExternalizedMapping(SoundLevel) => #3
                    Source2=#2, Source2=#3 -> Sink SetLevel => #4
                        ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                        WorkflowInput Source1 => #1
                        #1, #0 -> IntProperty(Value=80)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=360)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    SubscribeSubject RewardID
                    -> PropertyMapping(Value) => #6
                    #4, #6 -> IntProperty(Value=5)
                    -> Take(Count=1)
                    -> MulticastSubject SoundIndex
                    -> Timestamp
                    -> MemberSelector(Selector=Timestamp.TimeOfDay)
                    -> MulticastSubject RewardToneTime => #12
                    #12, #1 -> Delay(DueTime=PT0.8S)
                    -> WorkflowOutput
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve)
                -> MulticastSubject BehModule => #3
                SubscribeSubject RightValveTime
                -> PropertyMapping(DueTime) => #5
                #3, #5 -> Delay(DueTime=PT0.04S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve)
                -> MulticastSubject BehModule
                -> IntProperty(Value=1)
                -> MulticastSubject "RewSide "
                -> WorkflowOutput
            #0 -> Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> SelectMany RewardLeft => #4
                WorkflowInput Source1
                -> Disable SelectMany RewardTone(Description=SoundCard)
                    SubscribeSubject RewardDur
                    -> PropertyMapping(DueTime) => #1
                    WorkflowInput Source1 => #2
                    ExternalizedMapping(SoundLevel) => #3
                    Source2=#2, Source2=#3 -> Sink SetLevel => #4
                        ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                        WorkflowInput Source1 => #1
                        #1, #0 -> IntProperty(Value=80)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=360)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    SubscribeSubject RewardID
                    -> PropertyMapping(Value) => #6
                    #4, #6 -> IntProperty(Value=5)
                    -> Take(Count=1)
                    -> MulticastSubject SoundIndex
                    -> Timestamp
                    -> MemberSelector(Selector=Timestamp.TimeOfDay)
                    -> MulticastSubject RewardToneTime => #12
                    #12, #1 -> Delay(DueTime=PT0.8S)
                    -> WorkflowOutput
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke1Valve)
                -> MulticastSubject BehModule => #3
                SubscribeSubject LeftValveTime
                -> PropertyMapping(DueTime) => #5
                #3, #5 -> Delay(DueTime=PT0.04S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve)
                -> MulticastSubject BehModule
                -> IntProperty(Value=0)
                -> MulticastSubject "RewSide "
                -> WorkflowOutput
            #4, #2 -> Merge
            -> WorkflowOutput
        -> IntProperty(Value=1) => #3
        #0 -> Condition No
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany Failure
            WorkflowInput Source1
            -> Disable IntProperty(Value=1)
            -> Disable MulticastSubject Attempts
            -> SelectMany Timeout
                WorkflowInput Source1 => #0
                SubscribeSubject TimeoutDuration
                -> PropertyMapping(DueTime) => #2
                #0, #2 -> Delay(DueTime=PT3S)
                -> WorkflowOutput
            -> WorkflowOutput
        -> IntProperty(Value=0) => #6
        #3, #6 -> Merge
        -> MulticastSubject TrialOutcome
        -> Take(Count=1)
        -> WorkflowOutput
    #11 -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> IntProperty(Value=-1)
    -> MulticastSubject TrialOutcome => #16
    #13, #16 -> Merge
    -> Sink IncrementTrial
        SubscribeSubject TrialNumber => #0
        IntProperty(Value=1) => #1
        #0, #1 -> Zip
        -> Add
        -> MulticastSubject TrialNumber
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput
    #2, #3 -> GroupWorkflow Record_Latency
        SubscribeSubject TrialEnd
        -> Condition => #1
            WorkflowInput Source1
            -> WorkflowOutput
        WorkflowInput Source1
        -> SelectMany Start_Timer => #3
            Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.001S)
            -> MulticastSubject Time
            -> WorkflowOutput
        WorkflowInput Source2 => #4
        #1, #4 -> Merge => #5
        #3, #5 -> TakeUntil
        -> TakeLast(Count=1)
        -> MulticastSubject "Response_Latency (ms)"
        -> WorkflowOutput
    #2, #3, #10 -> GroupWorkflow Other_Latency_Method
        WorkflowInput Source1
        -> IntProperty(Value=0) => #1
        WorkflowInput Source2
        -> IntProperty(Value=0) => #3
        WorkflowInput Source3
        -> IntProperty(Value=0) => #5
        #1, #3, #5 -> Merge
        -> TimeInterval
        -> MemberSelector(Selector=Interval.TotalMilliseconds)
        -> Slice(Start=1, Step=2, Stop=nil)
        -> WorkflowOutput
-> Sink EndTrial
    WorkflowInput Source1
    -> BooleanProperty(Value=true)
    -> MulticastSubject TrialEnd
    -> WorkflowOutput
-> Repeat => #28
#28, #21 -> TakeUntil
-> WorkflowOutput

ExternalizedMapping(Exp_Name, Animal_ID)
-> GroupWorkflow Control_Parameters
    ExternalizedMapping(Value(DisplayName=Data_Path))
    -> StringProperty(Value=../../Data) => #1
    ExternalizedMapping(Value(DisplayName=Exp_Name))
    -> StringProperty(Value=AMP_MOD_DISC) => #3
    ExternalizedMapping(Value(DisplayName=Animal_ID))
    -> StringProperty(Value=TEST)
    -> BehaviorSubject Animal_ID => #6
    IntProperty(Value=0)
    -> Timestamp => #8
    -> MemberSelector(Selector=Timestamp.DateTime.Year) => #9
    #8 -> MemberSelector(Selector=Timestamp.DateTime.Month) => #10
    #8 -> MemberSelector(Selector=Timestamp.Date.Day) => #11
    #9, #10, #11 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1.toString() + "_" + Item2.toString() + "_" + Item3.toString() as date
        )
    -> MemberSelector(Selector=date) => #14
    #1, #3, #6, #14 -> Zip => #15
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Trial_Summary.csv" as Trial_Summary_File_Name
        )
    -> MemberSelector(Selector=Trial_Summary_File_Name)
    -> BehaviorSubject Trial_File_Name
    #15 -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Detected_Licks.csv" as Licks_File_Name
        )
    -> MemberSelector(Selector=Licks_File_Name)
    -> BehaviorSubject Licks_File_Name
    #15 -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Video_data.avi" as Video_File_Name
        )
    -> MemberSelector(Selector=Video_File_Name)
    -> BehaviorSubject Video_File_Name
    #15 -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Video_timestamps.txt" as Video_Timestamps_File_Name
        )
    -> MemberSelector(Selector=Video_Timestamps_File_Name)
    -> BehaviorSubject Video_Timestamps_File_Name

GroupWorkflow Save_Data
    SubscribeSubject FirstLick => #0
    SubscribeSubject TrialOutcome => #1
    SubscribeSubject TrialEnd
    -> Condition => #3
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject Animal_ID => #4
    SubscribeSubject "RewSide " => #5
    SubscribeSubject ITI => #6
    SubscribeSubject TrialNumber => #7
    SubscribeSubject AbortTrial => #8
    SubscribeSubject Correct => #9
    SubscribeSubject ResponseWindow => #10
    SubscribeSubject GoCueDur => #11
    SubscribeSubject CorrectCount => #12
    SubscribeSubject Trial_File_Name
    -> PropertyMapping(FileName) => #14
    SubscribeSubject "Response_Latency (ms)" => #15
    SubscribeSubject Rig_ID => #16
    SubscribeSubject Room_ID => #17
    #8, #12, #11, #6, #10, #17, #16 -> CombineLatest => #18
    SubscribeSubject Nb_Of_Amps => #19
    SubscribeSubject WN_Amp => #20
    #4, #7, #20, #0, #9, #5, #1 -> CombineLatest => #21
    #21, #18 -> CombineLatest => #22
    #22, #15, #19 -> CombineLatest => #23
    #23, #3 -> Sample
    -> Timestamp => #25
    -> MemberSelector(Selector=Value) => #26
    #25 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #27
    #26, #27 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #29
      Expression:
        new(
        Item1.Item1.Item1.Item1 as Animal_ID,
        Item1.Item1.Item1.Item2 as TrialNumber,
        Item1.Item1.Item1.Item3 as Tone,
        Item1.Item1.Item1.Item4 as FirstLick,
        Item1.Item1.Item1.Item5 as Correct,
        Item1.Item1.Item1.Item6 as Rewside,
        Item1.Item1.Item1.Item7 as TrialOutcome,

        Item1.Item1.Item2.Item1 as AbortTrial,
        Item1.Item1.Item2.Item2 as CorrectCount,
        Item1.Item1.Item2.Item3 as GoCueDur,
        Item1.Item1.Item2.Item4 as ITI,
        Item1.Item1.Item2.Item5 as ReponseWindow,
        Item1.Item1.Item2.Item6 as Room_ID,
        Item1.Item1.Item2.Item7 as Rig_ID,

        Item1.Item2 as Response_Latency,
        Item1.Item3 as Nb_Of_Tones,

        Item2 as Time
        )
    #29, #14 -> Bonsai.IO.CsvWriter(FileName=../../Data/TEST/AMP_MOD_DISC_TEST_2022_11_30/Trial_Summary.csv, Append=true, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    -> WorkflowOutput

    SubscribeSubject Beam1Bool => #32
    -> Timestamp => #33
    -> MemberSelector(Selector=Value) => #34
    #33 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #35
    #32 -> StringProperty(Value=Beam1Bool) => #36
    #34, #35, #36 -> Zip => #37
    SubscribeSubject Beam2Bool => #38
    -> Timestamp => #39
    -> MemberSelector(Selector=Value) => #40
    #39 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #41
    #38 -> StringProperty(Value=Beam2Bool) => #42
    #40, #41, #42 -> Zip => #43
    #37, #43 -> Merge
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #45
      Expression:
        new(
        Item1 as State,
        Item2 as Time,
        Item3 as Spout
        )
    SubscribeSubject Licks_File_Name
    -> PropertyMapping(FileName) => #47
    #45, #47 -> Bonsai.IO.CsvWriter
      FileName=../../Data/TEST/AMP_MOD_DISC_TEST_2022_11_30/Detected_Licks.csv
      Delimiter=","
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true

GroupWorkflow "Stats "
  Description:
    Light Blue = Percent_Correct
    Red = Percent_Right_Licks
    Orange = Percent_Abort_Trial
    Dark Blue = Normalised Response Latency
  Workflow
    GroupWorkflow Percent_Correct => #0
        SubscribeSubject Visualizer_Window_Size
        -> PropertyMapping(Count) => #1
        SubscribeSubject CorrectCount => #2
        SubscribeSubject AbortTrial
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> FloatProperty(Value=1)
        -> Accumulate
        -> Subtract(Operand=FloatProperty(Value=1)) => #7
        #2, #7 -> Zip
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> GreaterThan(Operand=FloatProperty(Value=0))
            -> WorkflowOutput
        -> Divide => #10
        #10, #1 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0)
        -> WorkflowOutput
    GroupWorkflow Percent_Abort_Trial => #1
        SubscribeSubject Visualizer_Window_Size
        -> PropertyMapping(Count) => #1
        SubscribeSubject TrialNumber
        -> FloatProperty(Value=1)
        -> Accumulate
        -> Subtract(Operand=FloatProperty(Value=1)) => #5
        SubscribeSubject AbortTrial => #6
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1) => #8
        #6 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=0) => #10
        #8, #10 -> Merge
        -> Accumulate => #12
        #12, #5 -> Zip
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> GreaterThan(Operand=FloatProperty(Value=0))
            -> WorkflowOutput
        -> Divide => #15
        #15, #1 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0)
        -> WorkflowOutput
    GroupWorkflow Percent_First_Lick_Right => #2
        SubscribeSubject Anti_Bias_Window
        -> PropertyMapping(Count) => #1
        SubscribeSubject FirstLick => #2
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> IntProperty(Value=0) => #4
        #2 -> Condition
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> IntProperty(Value=1) => #6
        #4, #6 -> Merge => #7
        #7, #1 -> Bonsai.Dsp.Buffer(Count=30, Skip=1)
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0)
        -> MulticastSubject Percent_Right_Licks
        -> WorkflowOutput
    GroupWorkflow Average_Normalised_Latency => #3
        SubscribeSubject Visualizer_Window_Size => #0
        -> PropertyMapping(Value) => #1
        #0 -> PropertyMapping(Count) => #2
        SubscribeSubject "Response_Latency (ms)" => #3
        #3, #2 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #6
        #6, #1 -> Divide(Operand=DoubleProperty(Value=20)) => #7
        SubscribeSubject ResponseWindow
        -> MemberSelector(Selector=TotalSeconds)
        -> Multiply(Operand=DoubleProperty(Value=1000))
        -> PropertyMapping(Value) => #11
        #7, #11 -> Divide(Operand=DoubleProperty(Value=3000))
        -> WorkflowOutput
    DoubleProperty(Value=0) => #4
    #0, #4 -> Merge => #5
    DoubleProperty(Value=0) => #6
    #1, #6 -> Merge => #7
    DoubleProperty(Value=0) => #8
    #2, #8 -> Merge => #9
    DoubleProperty(Value=0) => #10
    #3, #10 -> Merge => #11
    #5, #7, #9, #11 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as Percent_Correct,
        Item2 as Percent_Abort_Trial,
        Item3 as Right_Bias,
        Item4 as Normalized_Response_Latency
        )
    -> Bonsai.Design.Visualizers.RollingGraphBuilder
      ValueSelector="Percent_Correct,Percent_Abort_Trial,Right_Bias,Normalized_Response_Latency"
      SymbolType=None
      LineWidth=1
      Capacity=nil
      Min=nil
      Max=nil
    -> WorkflowOutput

GroupWorkflow Antibias
    IntProperty(Value=0) => #0
    -> ToArray
    -> BehaviorSubject Hit_Left
    #0 -> ToArray
    -> BehaviorSubject Rule_Left

    DoubleProperty(Value=0.5)
    -> BehaviorSubject P_Right

    ExternalizedMapping(Value(DisplayName=Anti_Bias_Window))
    -> IntProperty(Value=30)
    -> BehaviorSubject Anti_Bias_Window

    ExternalizedMapping(Value(DisplayName=Exp_Rate))
    -> FloatProperty(Value=1)
    -> BehaviorSubject Exp_Rate

    ExternalizedMapping(Value(DisplayName=Sigmoid_Slope))
    -> FloatProperty(Value=2)
    -> BehaviorSubject Sigmoid_Slope_0

    SubscribeSubject FirstLick => #16
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> IntProperty(Value=1) => #18
    #16 -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=2))
        -> WorkflowOutput
    -> IntProperty(Value=0) => #20
    #18, #20 -> Merge => #21
    SubscribeSubject AbortTrial
    -> Condition => #23
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    #21, #23 -> Sample => #24
    SubscribeSubject Tone => #25
    -> Condition <8
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=Boundary)) => #1
        #0, #1 -> LessThan(Operand=FloatProperty(Value=8))
        -> WorkflowOutput
    -> IntProperty(Value=1) => #27
    #25 -> Condition >8
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=Boundary)) => #1
        #0, #1 -> GreaterThan(Operand=FloatProperty(Value=8))
        -> WorkflowOutput
    -> IntProperty(Value=0) => #29
    #27, #29 -> Merge
    -> Skip(Count=1) => #31
    #31, #23 -> Sample => #32
    SubscribeSubject Anti_Bias_Window => #33
    -> PropertyMapping(Count) => #34
    #24, #34 -> BufferCount(Count=30, Skip=1)
    -> SelectMany Count_Hit_Left
        WorkflowInput Source1
        -> Merge
        -> ToArray
        -> MulticastSubject Hit_Left
        -> WorkflowOutput
    #33 -> PropertyMapping(Count) => #37
    #32, #37 -> BufferCount(Count=30, Skip=1)
    -> SelectMany Count_Rule_Left
        WorkflowInput Source1
        -> Merge
        -> ToArray
        -> MulticastSubject Rule_Left
        -> WorkflowOutput

    SubscribeSubject Hit_Left => #40
    SubscribeSubject Rule_Left => #41
    -> SelectMany Antibias_Params => #42
        SubscribeSubject Anti_Bias_Window => #0
        SubscribeSubject Exp_Rate => #1
        SubscribeSubject Sigmoid_Slope_0 => #2
        #0, #1, #2 -> Zip
        -> WorkflowOutput
    #40, #41, #42 -> Zip
    -> Bonsai.Scripting.IronPython.PythonTransform Gen_P_Right
      Description:
        Takes 3 inputs:
        - array of previous left choices
        - array of previous a priori left
        - tuple of 3 items: trials back, exponential rate and sigmoid slope
        Outputs P(Right)
      Script:
        @returns(float)
        def process(value):
          import math
          hit_left = value[0] #
          rule_left = value[1] #
          diff = [e-rule_left[c] for c,e in enumerate(hit_left)] # difference between hit left and a priori left
          diff_reverse = diff[::-1] # reverse order of incoming array to get earliest trials first

          # weigh this diff_reverse array with an exponential kernel that emphasizes recent history
          trials_back = value[2][0] # set size of exponential window
          rate = value[2][1] # set rate of exponential distribution
          kernel_window = [x / 10.0 for x in range(0, trials_back, 1)] # create kernel range, divide by 10 to capture most releant section of exponential function
          exp_kernel = [rate*(math.exp(-rate*x)) for x in kernel_window] # calculate exp fct for every kernel value
          exp_kernel = [x/sum(exp_kernel) for x in exp_kernel] # normalise
          bias =  sum(x*y for x, y in zip(diff_reverse, exp_kernel)) # calculate dot product of diff_reverse with exp_kernel
          # bias --> positive means left-bias, negative means right bias

          # pass this bias through a sigmoid function to obtain p_right
          slope_0 = value[2][2] # slope of sigmoid at x = 0
          beta = slope_0 * 4 # follows naturally from differentiation
          p_right = 1 / (1+math.exp(-beta*bias))
          return p_right
          #return bias
    -> MulticastSubject P_Right
