WorkflowBuilder(Version=2.6.3)
Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")

GroupWorkflow HarpBeh
  Description:
    Workflows to connect and interact with Harp Behaviour Module

    Will initialise device and create subjects:

    BehModuleInput -- Messagebytes -- output from devicecommand node to issue outputs to harp board

    BehBytes -- bytesarray -- messagebytes output to be written to .bin file with MatrixWriter node

    BeamXbool -- bool -- readout  for hi/lo state of photogate/lickspout connected to ethernet breakout ports
  Workflow
    Disable BooleanProperty(Value=false)
    -> Disable BehaviorSubject Beam0Bool
    -> Disable BehaviorSubject Beam1Bool
    -> Disable BehaviorSubject Beam2Bool

    BooleanProperty(Value=false)
    -> Bonsai.Harp.Format(MessageType=Write, Address=32, PayloadType=U8)
    -> BehaviorSubject BehModule

    ByteProperty(Value=0)
    -> ToArray
    -> BehaviorSubject BehBytes

    SubscribeSubject BehModule
    -> Skip(Count=1)
    -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM4) => #12
    Disable SubscribeSubject Emulate
    -> Disable Equal(Operand=BooleanProperty(Value=false))
    -> Disable Condition => #15
        WorkflowInput Source1
        -> WorkflowOutput
    #12, #15 -> Disable SubscribeWhen => #16
    -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke0InfraRedBeam)
    -> BehaviorSubject Beam0Bool
    #16 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke1InfraRedBeam)
    -> BehaviorSubject Beam1Bool
    #16 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke2InfraRedBeam)
    -> BehaviorSubject Beam2Bool
    #16 -> MemberSelector(Selector=MessageBytes)
    -> MulticastSubject BehBytes

    SubscribeSubject BehBytes
    -> Bonsai.Dsp.MatrixWriter(Path=C:\bonsai\bonsaiprotocols\base4harp\Beh_Hit_Data.bin, Suffix=FileCount, Overwrite=false, Layout=ColumnMajor)

    Disable GroupWorkflow Emulate(Description="Runs when emulate is True")
        Bonsai.Windows.Input.KeyDown(Filter=Down, SuppressRepetitions=false)
        -> BooleanProperty(Value=true) => #1
        Bonsai.Windows.Input.KeyUp(Filter=Down)
        -> BooleanProperty(Value=false) => #3
        #1, #3 -> Merge => #4
        SubscribeSubject Emulate
        -> Condition => #6
            WorkflowInput Source1
            -> WorkflowOutput
        #4, #6 -> SubscribeWhen
        -> MulticastSubject Beam0Bool

        Bonsai.Windows.Input.KeyDown(Filter=Up, SuppressRepetitions=false)
        -> BooleanProperty(Value=true) => #10
        Bonsai.Windows.Input.KeyUp(Filter=Up)
        -> BooleanProperty(Value=false) => #12
        #10, #12 -> Merge => #13
        SubscribeSubject Emulate
        -> Condition => #15
            WorkflowInput Source1
            -> WorkflowOutput
        #13, #15 -> SubscribeWhen
        -> MulticastSubject Beam1Bool

        Bonsai.Windows.Input.KeyDown(Filter=D2, SuppressRepetitions=false)
        -> BooleanProperty(Value=true) => #19
        Bonsai.Windows.Input.KeyUp(Filter=D2)
        -> BooleanProperty(Value=false) => #21
        #19, #21 -> Merge => #22
        SubscribeSubject Emulate
        -> Condition => #24
            WorkflowInput Source1
            -> WorkflowOutput
        #22, #24 -> SubscribeWhen
        -> MulticastSubject Beam2Bool

        Disable Bonsai.Windows.Input.KeyDown(Filter=None, SuppressRepetitions=false)
        -> Disable Bonsai.Audio.PlaySource(DeviceName="Generic Software on Speakers (Realtek High Definition Audio(SST))")

        Bonsai.Audio.CreateAudioContext(SampleRate=0, Refresh=0, Position(X=0, Y=0, Z=0), Velocity(X=0, Y=0, Z=0), Direction(X=-0, Y=-0, Z=-1), Up(X=0, Y=1, Z=0), Gain=1)
        -> Bonsai.Audio.AudioResources
          Buffers
            BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=i03_WhiteNoise, FileName=C:\bonsai\bonsaiprotocols\Sound\toSoundCard\03_WhiteNoise.wav)
            BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=i05_RewardTone_32bit_stereo_nohead, FileName=C:\Users\Dammy\Documents\HarpSoundCard\Interface\toSoundCard\i05_RewardTone_32bit_stereo_nohead.bin)
            BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=i05_GoCue, FileName=C:\Users\Dammy\Documents\HarpSoundCard\Interface\toSoundCard\i05_GoCue.bin)
            BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=i07_ViolationTone, FileName=C:\Users\Dammy\Documents\HarpSoundCard\Interface\toSoundCard\i07_ViolationTone.bin)
            BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=i08_TimeoutTone, FileName=C:\Users\Dammy\Documents\HarpSoundCard\Interface\toSoundCard\i08_TimeoutTone.bin)
            BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=i30_stop, FileName=C:\Users\Dammy\Documents\HarpSoundCard\Interface\toSoundCard\i30_stop.bin)
          Sources
            SourceConfiguration
              Name=WhiteNoise
              BufferName=i02_WhiteNoise
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Initial
            SourceConfiguration
              Name=RewardTone
              BufferName=i05_RewardTone_32bit_stereo_nohead
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Initial
            SourceConfiguration
              Name=GoCue
              BufferName=i05_GoCue
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Initial
            SourceConfiguration
              Name=ViolTone
              BufferName=i07_ViolationTone
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Initial
            SourceConfiguration
              Name=TimeoutTone
              BufferName=i08_TimeoutTone
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Initial
            SourceConfiguration
              Name=Stop
              BufferName=i30_stop
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Initial
        -> Bonsai.Resources.LoadResources

        SubscribeSubject SoundIndex => #32
        SubscribeSubject Soundcard?
        -> Condition => #34
            WorkflowInput Source1
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        #32, #34 -> SubscribeWhen => #35
        -> Condition 2
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=WhiteNoise))
        #35 -> Condition 2
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=WhiteNoise))
        #35 -> Condition 2
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=WhiteNoise))

        BooleanProperty(Value=false)
        -> BehaviorSubject Emulate

GroupWorkflow Sound_Mechanics
    SubscribeSubject Vol
    -> Skip(Count=1)
    -> Bonsai.Scripting.ExpressionTransform => #2
      Expression: uint16(it)
    SubscribeSubject Freq
    -> Skip(Count=1)
    -> Bonsai.Scripting.PythonTransform
      Script:
        @returns(float)
        def process(value):
          return 2**value
    -> Bonsai.Scripting.ExpressionTransform
      Expression: uint16(it)
    -> Bonsai.Harp.Format(MessageType=Write, Address=32, PayloadType=U16) => #7
    SubscribeSubject PlaySound
    -> Skip(Count=1)
    -> IntProperty(Value=32)
    -> Bonsai.Scripting.ExpressionTransform => #11
      Expression: uint16(it)
    #11, #2 -> CombineLatest
    -> SelectMany ToArray
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1) => #1
        #0 -> MemberSelector(Selector=Item2) => #2
        #1, #2 -> Merge
        -> ToArray
        -> WorkflowOutput
    -> Bonsai.Harp.Format(MessageType=Write, Address=36, PayloadType=U16) => #14
    SubscribeSubject StopSound
    -> IntProperty(Value=3)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: byte(it)
    -> Bonsai.Harp.Format(MessageType=Write, Address=33, PayloadType=U8) => #18
    #14, #7, #18 -> Merge
    -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM3)
    -> WorkflowOutput

    FloatProperty(Value=11.5)
    -> BehaviorSubject Freq

    IntProperty(Value=550)
    -> BehaviorSubject Vol

    SubscribeSubject Freq
    -> BehaviorSubject PlaySound

    Disable Bonsai.Windows.Input.KeyDown(Filter=End, SuppressRepetitions=false)
    -> IntProperty(Value=3)
    -> BehaviorSubject StopSound

    FloatProperty(Value=11.96578)
    -> BehaviorSubject 4kHz

    FloatProperty(Value=13.96578)
    -> BehaviorSubject 16kHz

ExternalizedMapping
  RightValveTime
  LeftValveTime
  ResponseWindow(DisplayName="ResponseWindow (s)")
  "ITI (ms)"
  Anti_Bias_Window
  "Reward_Delay (ms)"
  Rew_Avg_Window_Size
-> GroupWorkflow DynamicVariables
    ExternalizedMapping(Value(DisplayName=RightValveTime))
    -> FloatProperty(Value=0)
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject RightValveTime

    ExternalizedMapping(Value(DisplayName=LeftValveTime))
    -> FloatProperty(Value=0)
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject LeftValveTime

    ExternalizedMapping(Value(DisplayName=ResponseWindow))
    -> FloatProperty(Value=60)
    -> Bonsai.Scripting.ExpressionTransform TimeFromSeconds
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject ResponseWindow

    ExternalizedMapping(Value(DisplayName="ITI (ms)"))
    -> FloatProperty(Value=2000)
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject ITI

    ExternalizedMapping(Value(DisplayName=Anti_Bias_Window))
    -> IntProperty(Value=20)
    -> BehaviorSubject Anti_Bias_Window

    ExternalizedMapping(Value(DisplayName="Reward_Delay (ms)"))
    -> FloatProperty(Value=2000)
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject RewDelay

    ExternalizedMapping(Value(DisplayName=Rew_Avg_Window_Size))
    -> IntProperty(Value=20)
    -> BehaviorSubject Rew_Avg_Window_Size

GroupWorkflow StaticVariables
    FloatProperty(Value=1)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject WaitForResponse

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=1, Upper=3)
    -> BehaviorSubject DelayDistribution

    FloatProperty(Value=1)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject DelayPeriod

    BooleanProperty(Value=false)
    -> BehaviorSubject Correct

    Bonsai.Shaders.RenderFrame
    -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
    -> PublishSubject DrawQuad

    IntProperty(Value=0)
    -> PublishSubject TrialOutcome

    IntProperty(Value=0)
    -> BehaviorSubject FirstLick

    IntProperty(Value=0)
    -> BehaviorSubject SecondLick

    Bonsai.Shaders.Input.KeyDown(Key=End, Modifiers=nil)
    -> BehaviorSubject ExpEnd

    BooleanProperty(Value=false)
    -> BehaviorSubject OkToLick?

    BooleanProperty(Value=false)
    -> BehaviorSubject EarlyLick

    BooleanProperty(Value=false)
    -> BehaviorSubject TrialEnd

    IntProperty(Value=0)
    -> BehaviorSubject Tone

    StringProperty(Value=QP04)
    -> BehaviorSubject MouseID

    FloatProperty(Value=300)
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject ToneDur

    FloatProperty(Value=300)
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject GoCueDur

    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    IntProperty(Value=0)
    -> BehaviorSubject "RewSide "

    IntProperty(Value=0)
    -> BehaviorSubject DelayedReward

    IntProperty(Value=0)
    -> BehaviorSubject Reward

    BooleanProperty(Value=false)
    -> BehaviorSubject AbortTrial

    IntProperty(Value=0)
    -> BehaviorSubject Attempts

    IntProperty(Value=0)
    -> BehaviorSubject CorrectCount

    IntProperty(Value=0)
    -> BehaviorSubject RewardCount

    FloatProperty(Value=0.5)
    -> BehaviorSubject %_Right_Licks

SubscribeSubject ExpEnd => #6
SubscribeSubject ITI
-> PropertyMapping(DueTime)
-> Timer(DueTime=PT2S, Period=PT0S)
-> Sink PrepTrial
    WorkflowInput Source1
    -> Sink SetSpouts
        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject Beam1Bool

        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject Beam2Bool

        Disable SubscribeSubject Beam0Bool
        -> Disable Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> Disable BooleanProperty(Value=true)
        -> Disable MulticastSubject Beam0Bool
    -> Sink ResetAttempts
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> MulticastSubject Attempts
        -> WorkflowOutput
    -> WorkflowOutput
-> SelectMany Trial
    WorkflowInput Source1
    -> SelectMany Tone
        SubscribeSubject %_Right_Licks
        -> Take(Count=1) => #1
        -> Condition Below_30%
            WorkflowInput Source1
            -> LessThan(Operand=FloatProperty(Value=0.3))
            -> WorkflowOutput
        -> SelectMany 16kHz => #3
            SubscribeSubject 16kHz
            -> MulticastSubject Freq => #1
            SubscribeSubject ToneDur
            -> PropertyMapping(DueTime) => #3
            #1, #3 -> Delay(DueTime=PT0.3S)
            -> IntProperty(Value=3)
            -> MulticastSubject StopSound
            -> IntProperty(Value=16)
            -> MulticastSubject Tone
            -> Take(Count=1)
            -> WorkflowOutput
        #1 -> Condition Above_30%
            WorkflowInput Source1
            -> GreaterThan(Operand=FloatProperty(Value=0.7))
            -> WorkflowOutput
        -> SelectMany 4Khz => #5
            SubscribeSubject 4kHz
            -> MulticastSubject Freq => #1
            SubscribeSubject ToneDur
            -> PropertyMapping(DueTime) => #3
            #1, #3 -> Delay(DueTime=PT0.3S)
            -> IntProperty(Value=3)
            -> MulticastSubject StopSound
            -> IntProperty(Value=4)
            -> MulticastSubject Tone
            -> Take(Count=1)
            -> WorkflowOutput
        #1 -> Condition Random
            WorkflowInput Source1 => #0
            -> LessThanOrEqual(Operand=FloatProperty(Value=0.7)) => #1
            #0 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.3)) => #2
            #1, #2 -> Zip
            -> LogicalAnd
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany Create_Discrete_Uniform
            Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
            -> Bonsai.Numerics.Distributions.Sample
            -> Take(Count=1)
            -> WorkflowOutput
        -> Take(Count=1) => #8
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> SelectMany 4Khz => #10
            SubscribeSubject 4kHz
            -> MulticastSubject Freq => #1
            SubscribeSubject ToneDur
            -> PropertyMapping(DueTime) => #3
            #1, #3 -> Delay(DueTime=PT0.3S)
            -> IntProperty(Value=3)
            -> MulticastSubject StopSound
            -> IntProperty(Value=4)
            -> MulticastSubject Tone
            -> Take(Count=1)
            -> WorkflowOutput
        #8 -> Condition
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> SelectMany 16kHz => #12
            SubscribeSubject 16kHz
            -> MulticastSubject Freq => #1
            SubscribeSubject ToneDur
            -> PropertyMapping(DueTime) => #3
            #1, #3 -> Delay(DueTime=PT0.3S)
            -> IntProperty(Value=3)
            -> MulticastSubject StopSound
            -> IntProperty(Value=16)
            -> MulticastSubject Tone
            -> Take(Count=1)
            -> WorkflowOutput
        #10, #12, #5, #3 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany GoCue => #2
        WorkflowInput Source1 => #0
        SubscribeSubject GoCueDur
        -> PropertyMapping(DueTime) => #2
        #0, #2 -> Delay(DueTime=PT0.3S)
        -> WorkflowOutput
    -> SelectMany Response
        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=4) => #2
        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=16) => #5
        #2, #5 -> Merge
        -> Take(Count=1)
        -> Sink ResetSpouts
            SubscribeSubject Beam1Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BooleanProperty(Value=true)
            -> MulticastSubject Beam1Bool

            SubscribeSubject Beam2Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BooleanProperty(Value=true)
            -> MulticastSubject Beam2Bool
        -> Sink RecordFirstLick
            WorkflowInput Source1
            -> MulticastSubject FirstLick
            -> WorkflowOutput
        -> Disable Sink Count_%_Right_Licks
            WorkflowInput Source1
            -> MulticastSubject FirstLick => #1
            -> Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=4))
                -> WorkflowOutput
            -> IntProperty(Value=0) => #3
            #1 -> Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=16))
                -> WorkflowOutput
            -> IntProperty(Value=1) => #5
            #3, #5 -> Merge
            -> Bonsai.Dsp.Buffer(Count=3, Skip=1)
            -> Bonsai.Dsp.Sum
            -> MemberSelector(Selector=Val0)
            -> Divide(Operand=DoubleProperty(Value=10))
            -> MulticastSubject %_Right_Licks
            -> WorkflowOutput
        -> Take(Count=1) => #11
        SubscribeSubject Tone => #12
        #12, #11 -> Zip
        -> Equal
        -> MulticastSubject Correct => #15
        -> Take(Count=1) => #16
        #15 -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1) => #18
        SubscribeSubject CorrectCount => #19
        #18, #19 -> Zip
        -> Take(Count=1)
        -> Add => #22
        #15 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=0) => #24
        #24, #19 -> Zip
        -> Add => #26
        #22, #26 -> Merge
        -> MulticastSubject CorrectCount => #28
        #16, #28 -> Zip
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    -> BooleanProperty(Value=false)
    -> MulticastSubject AbortTrial => #5
    SubscribeSubject ResponseWindow
    -> PropertyMapping(DueTime) => #7
    #2, #7 -> Delay(DueTime=PT1M)
    -> BooleanProperty(Value=true)
    -> MulticastSubject AbortTrial => #10
    #5, #10 -> Merge => #11
    -> Condition
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> SelectMany Feedback => #13
        SubscribeSubject Correct => #0
        -> Condition Yes
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany Success
            SubscribeSubject FirstLick => #0
            -> Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=16))
                -> WorkflowOutput
            -> SelectMany RewardRight => #2
                WorkflowInput Source1
                -> Disable SelectMany RewardTone(Description=SoundCard)
                    SubscribeSubject RewardDur
                    -> PropertyMapping(DueTime) => #1
                    WorkflowInput Source1 => #2
                    ExternalizedMapping(SoundLevel) => #3
                    Source2=#2, Source2=#3 -> Sink SetLevel => #4
                        ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                        WorkflowInput Source1 => #1
                        #1, #0 -> IntProperty(Value=80)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=360)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    SubscribeSubject RewardID
                    -> PropertyMapping(Value) => #6
                    #4, #6 -> IntProperty(Value=5)
                    -> Take(Count=1)
                    -> MulticastSubject SoundIndex
                    -> Timestamp
                    -> MemberSelector(Selector=Timestamp.TimeOfDay)
                    -> MulticastSubject RewardToneTime => #12
                    #12, #1 -> Delay(DueTime=PT0.8S)
                    -> WorkflowOutput
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve)
                -> MulticastSubject BehModule => #3
                SubscribeSubject RightValveTime
                -> PropertyMapping(DueTime) => #5
                #3, #5 -> Delay(DueTime=PT0S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve)
                -> MulticastSubject BehModule
                -> IntProperty(Value=1)
                -> MulticastSubject "RewSide "
                -> WorkflowOutput
            #0 -> Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=4))
                -> WorkflowOutput
            -> SelectMany RewardLeft => #4
                WorkflowInput Source1
                -> Disable SelectMany RewardTone(Description=SoundCard)
                    SubscribeSubject RewardDur
                    -> PropertyMapping(DueTime) => #1
                    WorkflowInput Source1 => #2
                    ExternalizedMapping(SoundLevel) => #3
                    Source2=#2, Source2=#3 -> Sink SetLevel => #4
                        ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                        WorkflowInput Source1 => #1
                        #1, #0 -> IntProperty(Value=80)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=360)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    SubscribeSubject RewardID
                    -> PropertyMapping(Value) => #6
                    #4, #6 -> IntProperty(Value=5)
                    -> Take(Count=1)
                    -> MulticastSubject SoundIndex
                    -> Timestamp
                    -> MemberSelector(Selector=Timestamp.TimeOfDay)
                    -> MulticastSubject RewardToneTime => #12
                    #12, #1 -> Delay(DueTime=PT0.8S)
                    -> WorkflowOutput
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke1Valve)
                -> MulticastSubject BehModule => #3
                SubscribeSubject LeftValveTime
                -> PropertyMapping(DueTime) => #5
                #3, #5 -> Delay(DueTime=PT0S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve)
                -> MulticastSubject BehModule
                -> IntProperty(Value=0)
                -> MulticastSubject "RewSide "
                -> WorkflowOutput
            #4, #2 -> Merge
            -> WorkflowOutput
        -> IntProperty(Value=1) => #3
        #0 -> Condition No
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany "Failure - DelayedReward"
            WorkflowInput Source1
            -> IntProperty(Value=1)
            -> MulticastSubject Attempts
            -> SelectMany SecondChance
                SubscribeSubject Tone => #0
                -> Condition 4kHz => #1
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=4))
                    -> WorkflowOutput
                -> SelectMany LickLeft => #2
                    SubscribeSubject Beam1Bool
                    -> Condition
                        WorkflowInput Source1
                        -> BitwiseNot
                        -> WorkflowOutput
                    -> Sink ResetSpouts
                        SubscribeSubject Beam1Bool
                        -> Condition
                            WorkflowInput Source1
                            -> BitwiseNot
                            -> WorkflowOutput
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject Beam1Bool

                        SubscribeSubject Beam2Bool
                        -> Condition
                            WorkflowInput Source1
                            -> BitwiseNot
                            -> WorkflowOutput
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject Beam2Bool
                    -> BooleanProperty(Value=true)
                    -> Take(Count=1)
                    -> WorkflowOutput
                #1 -> SelectMany CountAttempts
                    SubscribeSubject Beam2Bool
                    -> Condition
                        WorkflowInput Source1
                        -> BitwiseNot
                        -> WorkflowOutput
                    -> IntProperty(Value=0)
                    -> MulticastSubject Attempts
                    -> IntProperty(Value=1)
                    -> Accumulate
                    -> Add(Operand=IntProperty(Value=1))
                    -> MulticastSubject Attempts
                    -> WorkflowOutput
                #0 -> Condition 16kHz => #4
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=16))
                    -> WorkflowOutput
                -> SelectMany LickRight => #5
                    SubscribeSubject Beam2Bool
                    -> Condition
                        WorkflowInput Source1
                        -> BitwiseNot
                        -> WorkflowOutput
                    -> Sink ResetSpouts
                        SubscribeSubject Beam1Bool
                        -> Condition
                            WorkflowInput Source1
                            -> BitwiseNot
                            -> WorkflowOutput
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject Beam1Bool

                        SubscribeSubject Beam2Bool
                        -> Condition
                            WorkflowInput Source1
                            -> BitwiseNot
                            -> WorkflowOutput
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject Beam2Bool
                    -> BooleanProperty(Value=true)
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #5 -> Merge
                -> WorkflowOutput
                #4 -> SelectMany CountAttempts
                    SubscribeSubject Beam1Bool
                    -> Condition
                        WorkflowInput Source1
                        -> BitwiseNot
                        -> WorkflowOutput
                    -> IntProperty(Value=0)
                    -> MulticastSubject Attempts
                    -> IntProperty(Value=1)
                    -> Accumulate
                    -> Add(Operand=IntProperty(Value=1))
                    -> MulticastSubject Attempts
                    -> WorkflowOutput
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany DelayedReward
                SubscribeSubject RewDelay => #0
                -> PropertyMapping(DueTime) => #1
                SubscribeSubject Tone => #2
                -> Condition 4kHz => #3
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=4))
                    -> WorkflowOutput
                #2 -> Condition 16kHz => #4
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=16))
                    -> WorkflowOutput
                #4, #1 -> Delay(DueTime=PT2S)
                -> SelectMany RewardRight => #6
                    WorkflowInput Source1
                    -> Disable SelectMany RewardTone(Description=SoundCard)
                        SubscribeSubject RewardDur
                        -> PropertyMapping(DueTime) => #1
                        WorkflowInput Source1 => #2
                        ExternalizedMapping(SoundLevel) => #3
                        Source2=#2, Source2=#3 -> Sink SetLevel => #4
                            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                            WorkflowInput Source1 => #1
                            #1, #0 -> IntProperty(Value=80)
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: (it-107.54)/-0.0764
                            -> PropertyMapping(Value)
                            -> IntProperty(Value=360)
                            -> Sink Left
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> Sink Right
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> WorkflowOutput
                        SubscribeSubject RewardID
                        -> PropertyMapping(Value) => #6
                        #4, #6 -> IntProperty(Value=5)
                        -> Take(Count=1)
                        -> MulticastSubject SoundIndex
                        -> Timestamp
                        -> MemberSelector(Selector=Timestamp.TimeOfDay)
                        -> MulticastSubject RewardToneTime => #12
                        #12, #1 -> Delay(DueTime=PT0.8S)
                        -> WorkflowOutput
                    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve)
                    -> MulticastSubject BehModule => #3
                    SubscribeSubject RightValveTime
                    -> PropertyMapping(DueTime) => #5
                    #3, #5 -> Delay(DueTime=PT0.05S)
                    -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve)
                    -> MulticastSubject BehModule
                    -> IntProperty(Value=1)
                    -> MulticastSubject "RewSide "
                    -> WorkflowOutput
                #0 -> PropertyMapping(DueTime) => #7
                #3, #7 -> Delay(DueTime=PT2S)
                -> SelectMany RewardLeft => #9
                    WorkflowInput Source1
                    -> Disable SelectMany RewardTone(Description=SoundCard)
                        SubscribeSubject RewardDur
                        -> PropertyMapping(DueTime) => #1
                        WorkflowInput Source1 => #2
                        ExternalizedMapping(SoundLevel) => #3
                        Source2=#2, Source2=#3 -> Sink SetLevel => #4
                            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                            WorkflowInput Source1 => #1
                            #1, #0 -> IntProperty(Value=80)
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: (it-107.54)/-0.0764
                            -> PropertyMapping(Value)
                            -> IntProperty(Value=360)
                            -> Sink Left
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> Sink Right
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> WorkflowOutput
                        SubscribeSubject RewardID
                        -> PropertyMapping(Value) => #6
                        #4, #6 -> IntProperty(Value=5)
                        -> Take(Count=1)
                        -> MulticastSubject SoundIndex
                        -> Timestamp
                        -> MemberSelector(Selector=Timestamp.TimeOfDay)
                        -> MulticastSubject RewardToneTime => #12
                        #12, #1 -> Delay(DueTime=PT0.8S)
                        -> WorkflowOutput
                    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke1Valve)
                    -> MulticastSubject BehModule => #3
                    SubscribeSubject LeftValveTime
                    -> PropertyMapping(DueTime) => #5
                    #3, #5 -> Delay(DueTime=PT0.05S)
                    -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve)
                    -> MulticastSubject BehModule
                    -> IntProperty(Value=0)
                    -> MulticastSubject "RewSide "
                    -> WorkflowOutput
                #9, #6 -> Merge
                -> WorkflowOutput
            -> WorkflowOutput
        -> IntProperty(Value=0) => #6
        #3, #6 -> Merge
        -> MulticastSubject TrialOutcome => #8
        -> Take(Count=1) => #9
        #8 -> IntProperty(Value=1) => #10
        SubscribeSubject RewardCount => #11
        #10, #11 -> Zip
        -> Take(Count=1)
        -> Add
        -> MulticastSubject RewardCount => #15
        #9, #15 -> Zip
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    #11 -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> IntProperty(Value=-1)
    -> MulticastSubject TrialOutcome => #16
    #13, #16 -> Merge
    -> Sink IncrementTrial
        SubscribeSubject TrialNumber => #0
        IntProperty(Value=1) => #1
        #0, #1 -> Zip
        -> Add
        -> MulticastSubject TrialNumber
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput
-> Sink EndTrial
    WorkflowInput Source1
    -> BooleanProperty(Value=true)
    -> MulticastSubject TrialEnd
    -> WorkflowOutput
-> Repeat => #13
#13, #6 -> TakeUntil
-> WorkflowOutput

ExternalizedMapping(Data_Path, Exp_Name, Animal_ID)
-> GroupWorkflow Control_Parameters
    ExternalizedMapping(Value(DisplayName=Data_Path))
    -> StringProperty(Value=../../Data) => #1
    ExternalizedMapping(Value(DisplayName=Exp_Name))
    -> StringProperty(Value=AUDITORY_DISCRIMINATION_NSI_FULL) => #3
    ExternalizedMapping(Value(DisplayName=Animal_ID))
    -> StringProperty(Value=TEST)
    -> BehaviorSubject Animal_ID => #6
    IntProperty(Value=0)
    -> Timestamp => #8
    -> MemberSelector(Selector=Timestamp.DateTime.Year) => #9
    #8 -> MemberSelector(Selector=Timestamp.DateTime.Month) => #10
    #8 -> MemberSelector(Selector=Timestamp.Date.Day) => #11
    #9, #10, #11 -> Zip
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1.toString() + "_" + Item2.toString() + "_" + Item3.toString() as date
        )
    -> MemberSelector(Selector=date) => #14
    #1, #3, #6, #14 -> Zip => #15
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Trial_Summary.csv" as Trial_Summary_File_Name
        )
    -> MemberSelector(Selector=Trial_Summary_File_Name)
    -> BehaviorSubject Trial_File_Name
    #15 -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Detected_Licks.csv" as Licks_File_Name
        )
    -> MemberSelector(Selector=Licks_File_Name)
    -> BehaviorSubject Licks_File_Name

GroupWorkflow Count_%_Right_Licks(Description="Calculate rolling average oif correct trials over window of desired size-")
    SubscribeSubject FirstLick => #0
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=4))
        -> WorkflowOutput
    -> IntProperty(Value=0) => #2
    #0 -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=16))
        -> WorkflowOutput
    -> IntProperty(Value=1) => #4
    #2, #4 -> Merge => #5
    SubscribeSubject Anti_Bias_Window => #6
    -> PropertyMapping(Value) => #7
    #6 -> PropertyMapping(Count) => #8
    #5, #8 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
    -> Bonsai.Dsp.Sum
    -> MemberSelector(Selector=Val0) => #11
    #11, #7 -> Divide(Operand=DoubleProperty(Value=20))
    -> MulticastSubject %_Right_Licks
    -> WorkflowOutput

GroupWorkflow Save_Data
    SubscribeSubject FirstLick => #0
    SubscribeSubject TrialOutcome => #1
    SubscribeSubject TrialEnd => #2
    SubscribeSubject Tone => #3
    SubscribeSubject Animal_ID => #4
    SubscribeSubject "RewSide " => #5
    SubscribeSubject Attempts => #6
    SubscribeSubject ITI => #7
    SubscribeSubject TrialNumber => #8
    SubscribeSubject AbortTrial => #9
    SubscribeSubject Correct => #10
    #4, #8, #3, #0, #10, #5, #6 -> CombineLatest => #11
    SubscribeSubject ResponseWindow => #12
    SubscribeSubject GoCueDur => #13
    SubscribeSubject CorrectCount => #14
    SubscribeSubject RewardCount => #15
    #1, #9, #14, #15, #13, #7, #12 -> CombineLatest => #16
    #11, #16 -> CombineLatest => #17
    #17, #2 -> Sample
    -> Timestamp => #19
    -> MemberSelector(Selector=Value) => #20
    #19 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #21
    #20, #21 -> Zip
    -> Bonsai.Scripting.ExpressionTransform => #23
      Expression:
        new(
        Item1.Item1.Item1 as Animal_ID,
        Item1.Item1.Item2 as TrialNumber,
        Item1.Item1.Item3 as Tone,
        Item1.Item1.Item4 as FirstLick,
        Item1.Item1.Item5 as Correct,
        Item1.Item1.Item6 as Rewside,
        Item1.Item1.Item7 as Attempts,
        Item1.Item2.Item1 as TrialOutcome,
        Item1.Item2.Item2 as AbortTrial,
        Item1.Item2.Item3 as CorrectCount,
        Item1.Item2.Item4 as RewardCount,
        Item1.Item2.Item5 as GoCueDur,
        Item1.Item2.Item6 as ITI,
        Item1.Item2.Item7 as ReponseWindow,
        Item2 as Time
        )
    SubscribeSubject Trial_File_Name
    -> PropertyMapping(FileName) => #25
    #23, #25 -> Bonsai.IO.CsvWriter
      FileName=../../Data/TEST/AUDITORY_DISCRIMINATION_NSI_FULL_TEST_2022_5_19/Trial_Summary.csv
      Append=true
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true
    -> WorkflowOutput

    SubscribeSubject Beam1Bool => #28
    -> Timestamp => #29
    -> MemberSelector(Selector=Value) => #30
    #29 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #31
    #28 -> StringProperty(Value=Beam1Bool) => #32
    #30, #31, #32 -> Zip => #33
    SubscribeSubject Beam2Bool => #34
    -> Timestamp => #35
    -> MemberSelector(Selector=Value) => #36
    #35 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #37
    #34 -> StringProperty(Value=Beam2Bool) => #38
    #36, #37, #38 -> Zip => #39
    #33, #39 -> Merge
    -> Bonsai.Scripting.ExpressionTransform => #41
      Expression:
        new(
        Item1 as State,
        Item2 as Time,
        Item3 as Spout
        )
    SubscribeSubject Licks_File_Name
    -> PropertyMapping(FileName) => #43
    #41, #43 -> Bonsai.IO.CsvWriter
      FileName=../../Data/AUDITORY_DISCRIMINATION_NSI_FULL_TEST_2022_5_19/Detected_Licks.csv
      Delimiter=","
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true

GroupWorkflow Performance_Visualizer
    GroupWorkflow Percent_Correct
        SubscribeSubject CorrectCount => #0
        SubscribeSubject RewardCount => #1
        SubscribeSubject Rew_Avg_Window_Size => #2
        -> PropertyMapping(Value) => #3
        #2 -> PropertyMapping(Count) => #4
        #0, #4 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #7
        #7, #3 -> Divide(Operand=DoubleProperty(Value=20)) => #8
        #2 -> PropertyMapping(Count) => #9
        #1, #9 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #12
        #2 -> PropertyMapping(Value) => #13
        #12, #13 -> Divide(Operand=DoubleProperty(Value=20)) => #14
        #8, #14 -> Zip => #15
        -> MemberSelector(Selector=Item1) => #16
        #15 -> MemberSelector(Selector=Item2)
        -> PropertyMapping(Value) => #18
        #16, #18 -> Divide(Operand=DoubleProperty(Value=123.5))
        -> WorkflowOutput

    SubscribeSubject AbortTrial
