WorkflowBuilder(Version=2.6.2)
GroupWorkflow HarpBeh
  Description:
    Workflows to connect and interact with Harp Behaviour Module

    Will initialise device and create subjects:

    BehModuleInput -- Messagebytes -- output from devicecommand node to issue outputs to harp board

    BehBytes -- bytesarray -- messagebytes output to be written to .bin file with MatrixWriter node

    BeamXbool -- bool -- readout  for hi/lo state of photogate/lickspout connected to ethernet breakout ports
  Workflow
    Disable BooleanProperty(Value=false)
    -> Disable BehaviorSubject Beam0Bool
    -> Disable BehaviorSubject Beam1Bool
    -> Disable BehaviorSubject Beam2Bool

    BooleanProperty(Value=false)
    -> Bonsai.Harp.Format(MessageType=Write, Address=32, PayloadType=U8)
    -> BehaviorSubject BehModule

    ByteProperty(Value=0)
    -> ToArray
    -> BehaviorSubject BehBytes

    Disable SubscribeSubject BehModule
    -> Disable Skip(Count=1)
    -> Disable Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM4) => #12
    -> Disable Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke0InfraRedBeam)
    -> Disable BehaviorSubject Beam0Bool
    #12 -> Disable Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke1InfraRedBeam)
    -> Disable BehaviorSubject Beam1Bool
    #12 -> Disable Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke2InfraRedBeam)
    -> Disable BehaviorSubject Beam2Bool
    #12 -> Disable MemberSelector(Selector=MessageBytes)
    -> Disable MulticastSubject BehBytes

    SubscribeSubject BehBytes
    -> Bonsai.Dsp.MatrixWriter(Path=C:\bonsai\bonsaiprotocols\base4harp\Beh_Hit_Data.bin, Suffix=FileCount, Overwrite=false, Layout=ColumnMajor)

    SubscribeSubject BehModule
    -> Skip(Count=1)
    -> GroupWorkflow Device_Emulator
        ExternalizedMapping(Value(DisplayName=True_Harp))
        -> BooleanProperty(Value=true)
        -> Condition => #2
            WorkflowInput Source1
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=Emulate))
        -> BooleanProperty(Value=true) => #4
        -> PropertyMapping(Emulate)
        -> GroupWorkflow Poke_0_Emulator => #6
            ExternalizedMapping(Value(DisplayName=Emulate))
            -> BooleanProperty(Value=true) => #1
            ExternalizedMapping(Value(DisplayName=Filter))
            -> PropertySource<Bonsai.Windows.Input.KeyDown,System.Windows.Forms.Keys>(MemberName=Filter, Value=D0) => #3
            -> PropertyMapping(Filter) => #4
            ExternalizedMapping(SuppressRepetitions) => #5
            #4, #5 -> Bonsai.Windows.Input.KeyDown(Filter=D0, SuppressRepetitions=true)
            -> BooleanProperty(Value=false) => #7
            #3 -> PropertyMapping(Filter)
            -> Bonsai.Windows.Input.KeyUp(Filter=D0)
            -> BooleanProperty(Value=true) => #10
            #10, #7 -> Merge => #11
            #11, #1 -> SubscribeWhen
            -> WorkflowOutput
        #4 -> PropertyMapping(Emulate)
        -> GroupWorkflow Poke_1_Emulator => #8
            ExternalizedMapping(Value(DisplayName=Emulate))
            -> BooleanProperty(Value=true) => #1
            ExternalizedMapping(Value(DisplayName=Filter))
            -> PropertySource<Bonsai.Windows.Input.KeyDown,System.Windows.Forms.Keys>(MemberName=Filter, Value=D1) => #3
            -> PropertyMapping(Filter) => #4
            ExternalizedMapping(SuppressRepetitions) => #5
            #4, #5 -> Bonsai.Windows.Input.KeyDown(Filter=D1, SuppressRepetitions=true)
            -> BooleanProperty(Value=false) => #7
            #3 -> PropertyMapping(Filter)
            -> Bonsai.Windows.Input.KeyUp(Filter=D1)
            -> BooleanProperty(Value=true) => #10
            #10, #7 -> Merge => #11
            #11, #1 -> SubscribeWhen
            -> WorkflowOutput
        #4 -> PropertyMapping(Emulate)
        -> GroupWorkflow Poke_2_Emulator => #10
            ExternalizedMapping(Value(DisplayName=Emulate))
            -> BooleanProperty(Value=true) => #1
            ExternalizedMapping(Value(DisplayName=Filter))
            -> PropertySource<Bonsai.Windows.Input.KeyDown,System.Windows.Forms.Keys>(MemberName=Filter, Value=D2) => #3
            -> PropertyMapping(Filter) => #4
            ExternalizedMapping(SuppressRepetitions) => #5
            #4, #5 -> Bonsai.Windows.Input.KeyDown(Filter=D2, SuppressRepetitions=true)
            -> BooleanProperty(Value=false) => #7
            #3 -> PropertyMapping(Filter)
            -> Bonsai.Windows.Input.KeyUp(Filter=D2)
            -> BooleanProperty(Value=true) => #10
            #10, #7 -> Merge => #11
            #11, #1 -> SubscribeWhen
            -> WorkflowOutput
        WorkflowInput Source1 => #11
        ExternalizedMapping(PortName) => #12
        #11, #12 -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM4) => #13
        #13, #2 -> SubscribeWhen => #14
        -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port0) => #15
        #15, #6 -> Merge
        -> BehaviorSubject Beam0Bool
        #14 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port1) => #18
        #18, #8 -> Merge
        -> BehaviorSubject Beam1Bool
        #14 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port2) => #21
        #21, #10 -> Merge
        -> BehaviorSubject Beam2Bool
        #14 -> MemberSelector(Selector=MessageBytes)
        -> MulticastSubject BehBytes

GroupWorkflow HarpSoundCard
    SubscribeSubject PlaySound
    -> Skip(Count=1) => #1
    SubscribeSubject Soundcard?
    -> Condition => #3
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=true))
        -> WorkflowOutput
    SubscribeSubject SoundIndex
    -> Skip(Count=1)
    -> Timestamp
    -> MemberSelector(Selector=Timestamp) => #7
    Disable SubscribeSubject Volume
    -> Disable Skip(Count=1)
    -> Disable Bonsai.Scripting.ExpressionTransform => #10
      Expression: uint16(it)
    SubscribeSubject Freq
    -> Skip(Count=1)
    -> Bonsai.Scripting.PythonTransform
      Script:
        @returns(float)
        def process(value):
          return 2**value
    -> Bonsai.Scripting.ExpressionTransform
      Expression: uint16(it)
    -> Bonsai.Harp.Format(MessageType=Write, Address=32, PayloadType=U16) => #15
    Disable SubscribeSubject PlayTone
    -> Disable Skip(Count=1)
    -> Disable IntProperty(Value=32)
    -> Disable Bonsai.Scripting.ExpressionTransform => #19
      Expression: uint16(it)
    #19, #10 -> Disable CombineLatest
    -> Disable SelectMany ToArray
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1) => #1
        #0 -> MemberSelector(Selector=Item2) => #2
        #1, #2 -> Merge
        -> ToArray
        -> WorkflowOutput
    -> Disable IntProperty(Value=1)
    -> Disable Bonsai.Harp.Format(MessageType=Write, Address=36, PayloadType=U16) => #23
    SubscribeSubject StopSound
    -> IntProperty(Value=3)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: byte(it)
    -> Bonsai.Harp.Format(MessageType=Write, Address=33, PayloadType=U8) => #27
    SubscribeSubject Volume
    -> Skip(Count=1)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: uint16(it)
    -> Sink
        WorkflowInput Source1
        -> Bonsai.Harp.Format(MessageType=Write, Address=34, PayloadType=U8)
        -> WorkflowOutput
    -> Bonsai.Harp.Format(MessageType=Write, Address=35, PayloadType=U8) => #32
    #23, #15, #27, #32 -> Merge => #33
    #1, #33 -> Merge => #34
    -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM3) => #35
    #35, #3 -> SubscribeWhen
    #34 -> Timestamp
    -> MemberSelector(Selector=Timestamp) => #38
    #38, #7 -> Zip
    -> Subtract

    IntProperty(Value=0)
    -> BehaviorSubject SoundIndex

    SubscribeSubject SoundIndex
    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U16, Payload=0)
    -> BehaviorSubject PlaySound

    ExternalizedMapping(Value(DisplayName=Soundcard?))
    -> BooleanProperty(Value=true)
    -> BehaviorSubject Soundcard?

    FloatProperty(Value=11.5)
    -> BehaviorSubject Freq

    IntProperty(Value=1000)
    -> BehaviorSubject Volume

    SubscribeSubject Freq
    -> BehaviorSubject PlayTone

    Disable Bonsai.Windows.Input.KeyDown(Filter=End, SuppressRepetitions=false)
    -> IntProperty(Value=3)
    -> BehaviorSubject StopSound

    FloatProperty(Value=11.96578)
    -> BehaviorSubject 4kHz

    FloatProperty(Value=12.36578)
    -> BehaviorSubject 5.3kHz

    FloatProperty(Value=12.76578)
    -> BehaviorSubject 7kHz

    FloatProperty(Value=12.86578)
    -> BehaviorSubject 7.5kHz

    FloatProperty(Value=13.06578)
    -> BehaviorSubject 8.6kHz

    FloatProperty(Value=13.16578)
    -> BehaviorSubject 9.2kHz

    FloatProperty(Value=13.56578)
    -> BehaviorSubject 12.1kHz

    FloatProperty(Value=13.96578)
    -> BehaviorSubject 16kHz

GroupWorkflow CameraStreaming
    Bonsai.Osc.CreateTcpServer(Name=Emitter, Port=1234, NoDelay=false, AllowNatTraversal=false)

    SubscribeSubject Video_File_Name
    -> PropertyMapping(FileName) => #2
    Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
    -> DelaySubscription(DueTime=PT1S)
    -> Retry => #5
    #5, #2 -> Bonsai.Vision.VideoWriter
      FileName=../../Data/TEST/AUDITORY_DISCRIMINATION_PSYCHOMETRIC_TEST_2022_8_1/Video_data.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=true
      FourCC=FMP4
      FrameRate=60
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    #5 -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #8
    SubscribeSubject Video_Timestamps_File_Name
    -> PropertyMapping(FileName) => #10
    #8, #10 -> Bonsai.IO.TextWriter
      FileName=../../Data/TEST/AUDITORY_DISCRIMINATION_PSYCHOMETRIC_TEST_2022_8_1/Video_timestamps.txt
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      Append=false
    #5 -> Bonsai.Dsp.ConvertToArray(Depth=nil)
    -> Bonsai.Osc.SendMessage(Connection=Emitter, Address=/tcpimage)

GroupWorkflow Render_Loop
    Bonsai.Shaders.CreateWindow
      Width=1
      Height=1
      VSync=On
      SwapSync=false
      ClearColor=Black
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Minimized
      DisplayDevice=Primary
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false

    Bonsai.Shaders.Timer(DueTime=PT0S)

ExternalizedMapping
  "RightValveTime (ms)"
  "LeftValveTime (ms)"
  "ResponseWindow (s)"(DisplayName="ResponseWindow (s)")
  "ITI (s)"
  Anti_Bias_Window
  Visualizer_Window_Size
  "TimeoutDuration (s)"
  Room_ID
  Rig_ID
-> GroupWorkflow DynamicVariables
    ExternalizedMapping(Value(DisplayName="RightValveTime (ms)"))
    -> FloatProperty(Value=46)
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject RightValveTime

    ExternalizedMapping(Value(DisplayName="LeftValveTime (ms)"))
    -> FloatProperty(Value=47)
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject LeftValveTime

    ExternalizedMapping(Value(DisplayName="ResponseWindow (s)"))
    -> FloatProperty(Value=10)
    -> Bonsai.Scripting.ExpressionTransform TimeFromSeconds
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject ResponseWindow

    ExternalizedMapping(Value(DisplayName="ITI (s)"))
    -> FloatProperty(Value=2)
    -> Bonsai.Scripting.ExpressionTransform TimeFromSeconds
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject ITI

    ExternalizedMapping(Value(DisplayName=Anti_Bias_Window))
    -> IntProperty(Value=20)
    -> BehaviorSubject Anti_Bias_Window

    ExternalizedMapping(Value(DisplayName=Visualizer_Window_Size))
    -> IntProperty(Value=20)
    -> BehaviorSubject Visualizer_Window_Size

    ExternalizedMapping(Value(DisplayName="TimeoutDuration (s)"))
    -> FloatProperty(Value=3)
    -> Bonsai.Scripting.ExpressionTransform TimeFromSeconds
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject TimeoutDuration

    ExternalizedMapping(Value(DisplayName=Room_ID))
    -> StringProperty(Value=311)
    -> BehaviorSubject Room_ID

    ExternalizedMapping(Value(DisplayName=Rig_ID))
    -> StringProperty(Value=1)
    -> BehaviorSubject Rig_ID

GroupWorkflow StaticVariables
    FloatProperty(Value=1)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject WaitForResponse

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=1, Upper=3)
    -> BehaviorSubject DelayDistribution

    FloatProperty(Value=1)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject DelayPeriod

    BooleanProperty(Value=false)
    -> BehaviorSubject Correct

    Bonsai.Shaders.RenderFrame
    -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
    -> PublishSubject DrawQuad

    IntProperty(Value=0)
    -> PublishSubject TrialOutcome

    IntProperty(Value=0)
    -> BehaviorSubject FirstLick

    IntProperty(Value=0)
    -> BehaviorSubject SecondLick

    Bonsai.Shaders.Input.KeyDown(Key=End, Modifiers=nil)
    -> BehaviorSubject ExpEnd

    BooleanProperty(Value=false)
    -> BehaviorSubject OkToLick?

    BooleanProperty(Value=false)
    -> BehaviorSubject EarlyLick

    BooleanProperty(Value=false)
    -> BehaviorSubject TrialEnd

    FloatProperty(Value=0)
    -> BehaviorSubject Tone

    StringProperty(Value=QP04)
    -> BehaviorSubject MouseID

    FloatProperty(Value=300)
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject ToneDur

    FloatProperty(Value=300)
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject GoCueDur

    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    IntProperty(Value=0)
    -> BehaviorSubject "RewSide "

    IntProperty(Value=0)
    -> BehaviorSubject DelayedReward

    IntProperty(Value=0)
    -> BehaviorSubject Reward

    BooleanProperty(Value=false)
    -> BehaviorSubject AbortTrial

    IntProperty(Value=0)
    -> BehaviorSubject Attempts

    IntProperty(Value=0)
    -> BehaviorSubject CorrectCount

    IntProperty(Value=0)
    -> BehaviorSubject RewardCount

    DoubleProperty(Value=0)
    -> BehaviorSubject Percent_Right_Licks

    IntProperty(Value=0)
    -> BehaviorSubject Time

    IntProperty(Value=0)
    -> BehaviorSubject "Response_Latency (ms)"

SubscribeSubject ExpEnd => #7
SubscribeSubject ITI
-> PropertyMapping(DueTime)
-> Timer(DueTime=PT2S, Period=PT0S)
-> Sink PrepTrial
    WorkflowInput Source1
    -> Sink SetSpouts
        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject Beam1Bool

        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject Beam2Bool

        Disable SubscribeSubject Beam0Bool
        -> Disable Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> Disable BooleanProperty(Value=true)
        -> Disable MulticastSubject Beam0Bool
    -> Sink ResetAttempts
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> MulticastSubject Attempts
        -> WorkflowOutput
    -> Sink CheckValvesClosed
        WorkflowInput Source1 => #0
        -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve)
        -> MulticastSubject BehModule => #2
        #0 -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve)
        -> MulticastSubject BehModule => #4
        #2, #4 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> Sink "TrialEnd = False"
        WorkflowInput Source1
        -> BooleanProperty(Value=false)
        -> MulticastSubject TrialEnd
        -> WorkflowOutput
    -> WorkflowOutput
-> SelectMany Trial
    WorkflowInput Source1
    -> SelectMany Tone
        SubscribeSubject TrialNumber => #0
        -> Condition
            WorkflowInput Source1 => #0
            SubscribeSubject Anti_Bias_Window
            -> PropertyMapping(Value) => #2
            #0, #2 -> GreaterThanOrEqual(Operand=IntProperty(Value=20))
            -> WorkflowOutput
        -> SelectMany Anti_Bias_ON => #2
            SubscribeSubject Percent_Right_Licks
            -> Take(Count=1) => #1
            -> Condition Below_20%
                WorkflowInput Source1
                -> LessThan(Operand=FloatProperty(Value=0.2))
                -> WorkflowOutput
            -> SelectMany Create_Discrete_Uniform
                Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=3)
                -> Bonsai.Numerics.Distributions.Sample
                -> Take(Count=1)
                -> WorkflowOutput
            -> GroupWorkflow Above_8kHz => #4
                WorkflowInput Source1
                -> Take(Count=1) => #1
                -> Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=3))
                    -> WorkflowOutput
                -> SelectMany 16kHz => #3
                    SubscribeSubject 16kHz
                    -> Sink SetLevel
                        WorkflowInput Source1
                        -> IntProperty(Value=90)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=229)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    -> MulticastSubject Freq => #2
                    SubscribeSubject ToneDur
                    -> PropertyMapping(DueTime) => #4
                    #2, #4 -> Delay(DueTime=PT0.3S)
                    -> IntProperty(Value=3)
                    -> MulticastSubject StopSound
                    -> IntProperty(Value=16)
                    -> MulticastSubject Tone
                    -> Take(Count=1)
                    -> WorkflowOutput
                #1 -> Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=0))
                    -> WorkflowOutput
                -> SelectMany 8.6Khz => #5
                    SubscribeSubject 8.6kHz
                    -> Sink SetLevel
                        WorkflowInput Source1
                        -> IntProperty(Value=90)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=229)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    -> MulticastSubject Freq => #2
                    SubscribeSubject ToneDur
                    -> PropertyMapping(DueTime) => #4
                    #2, #4 -> Delay(DueTime=PT0.3S)
                    -> IntProperty(Value=3)
                    -> MulticastSubject StopSound
                    -> FloatProperty(Value=8.6)
                    -> MulticastSubject Tone
                    -> Take(Count=1)
                    -> WorkflowOutput
                #1 -> Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> SelectMany 9.2Khz => #7
                    SubscribeSubject 9.2kHz
                    -> Sink SetLevel
                        WorkflowInput Source1
                        -> IntProperty(Value=90)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=229)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    -> MulticastSubject Freq => #2
                    SubscribeSubject ToneDur
                    -> PropertyMapping(DueTime) => #4
                    #2, #4 -> Delay(DueTime=PT0.3S)
                    -> IntProperty(Value=3)
                    -> MulticastSubject StopSound
                    -> FloatProperty(Value=9.2)
                    -> MulticastSubject Tone
                    -> Take(Count=1)
                    -> WorkflowOutput
                #1 -> Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=2))
                    -> WorkflowOutput
                -> SelectMany 12.1khz => #9
                    SubscribeSubject 12.1kHz
                    -> Sink SetLevel
                        WorkflowInput Source1
                        -> IntProperty(Value=90)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=229)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    -> MulticastSubject Freq => #2
                    SubscribeSubject ToneDur
                    -> PropertyMapping(DueTime) => #4
                    #2, #4 -> Delay(DueTime=PT0.3S)
                    -> IntProperty(Value=3)
                    -> MulticastSubject StopSound
                    -> FloatProperty(Value=12.1)
                    -> MulticastSubject Tone
                    -> Take(Count=1)
                    -> WorkflowOutput
                #3, #5, #7, #9 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #1 -> Condition Above_80%
                WorkflowInput Source1
                -> GreaterThan(Operand=FloatProperty(Value=0.8))
                -> WorkflowOutput
            -> SelectMany Create_Discrete_Uniform
                Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=3)
                -> Bonsai.Numerics.Distributions.Sample
                -> Take(Count=1)
                -> WorkflowOutput
            -> GroupWorkflow Below_8kHz => #7
                WorkflowInput Source1
                -> Take(Count=1) => #1
                -> Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=0))
                    -> WorkflowOutput
                -> SelectMany 4Khz => #3
                    SubscribeSubject 4kHz
                    -> Sink SetLevel
                        WorkflowInput Source1
                        -> IntProperty(Value=90)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=229)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    -> MulticastSubject Freq => #2
                    SubscribeSubject ToneDur
                    -> PropertyMapping(DueTime) => #4
                    #2, #4 -> Delay(DueTime=PT0.3S)
                    -> IntProperty(Value=3)
                    -> MulticastSubject StopSound
                    -> IntProperty(Value=4)
                    -> MulticastSubject Tone
                    -> Take(Count=1)
                    -> WorkflowOutput
                #1 -> Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=2))
                    -> WorkflowOutput
                -> SelectMany 7Khz => #5
                    SubscribeSubject 7kHz
                    -> Sink SetLevel
                        WorkflowInput Source1
                        -> IntProperty(Value=90)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=229)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    -> MulticastSubject Freq => #2
                    SubscribeSubject ToneDur
                    -> PropertyMapping(DueTime) => #4
                    #2, #4 -> Delay(DueTime=PT0.3S)
                    -> IntProperty(Value=3)
                    -> MulticastSubject StopSound
                    -> FloatProperty(Value=7)
                    -> MulticastSubject Tone
                    -> Take(Count=1)
                    -> WorkflowOutput
                #1 -> Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=3))
                    -> WorkflowOutput
                -> SelectMany 7.5Khz => #7
                    SubscribeSubject 7.5kHz
                    -> Sink SetLevel
                        WorkflowInput Source1
                        -> IntProperty(Value=90)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=229)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    -> MulticastSubject Freq => #2
                    SubscribeSubject ToneDur
                    -> PropertyMapping(DueTime) => #4
                    #2, #4 -> Delay(DueTime=PT0.3S)
                    -> IntProperty(Value=3)
                    -> MulticastSubject StopSound
                    -> FloatProperty(Value=7.5)
                    -> MulticastSubject Tone
                    -> Take(Count=1)
                    -> WorkflowOutput
                #1 -> Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> SelectMany 5.3Khz => #9
                    SubscribeSubject 5.3kHz
                    -> Sink SetLevel
                        WorkflowInput Source1
                        -> IntProperty(Value=90)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=229)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    -> MulticastSubject Freq => #2
                    SubscribeSubject ToneDur
                    -> PropertyMapping(DueTime) => #4
                    #2, #4 -> Delay(DueTime=PT0.3S)
                    -> IntProperty(Value=3)
                    -> MulticastSubject StopSound
                    -> FloatProperty(Value=5.3)
                    -> MulticastSubject Tone
                    -> Take(Count=1)
                    -> WorkflowOutput
                #3, #9, #5, #7 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #1 -> Condition "Between 20% and 80%"
                WorkflowInput Source1 => #0
                -> LessThanOrEqual(Operand=FloatProperty(Value=0.8)) => #1
                #0 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.2)) => #2
                #1, #2 -> Zip
                -> LogicalAnd
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany Create_Discrete_Uniform
                Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=7)
                -> Bonsai.Numerics.Distributions.Sample
                -> Take(Count=1)
                -> WorkflowOutput
            -> GroupWorkflow Random_Tone => #10
                WorkflowInput Source1
                -> Take(Count=1) => #1
                -> Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=0))
                    -> WorkflowOutput
                -> SelectMany 4Khz => #3
                    SubscribeSubject 4kHz
                    -> Sink SetLevel
                        WorkflowInput Source1
                        -> IntProperty(Value=90)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=229)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    -> MulticastSubject Freq => #2
                    SubscribeSubject ToneDur
                    -> PropertyMapping(DueTime) => #4
                    #2, #4 -> Delay(DueTime=PT0.3S)
                    -> IntProperty(Value=3)
                    -> MulticastSubject StopSound
                    -> FloatProperty(Value=4)
                    -> MulticastSubject Tone
                    -> Take(Count=1)
                    -> WorkflowOutput
                #1 -> Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=2))
                    -> WorkflowOutput
                -> SelectMany 7Khz => #5
                    SubscribeSubject 7kHz
                    -> Sink SetLevel
                        WorkflowInput Source1
                        -> IntProperty(Value=90)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=229)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    -> MulticastSubject Freq => #2
                    SubscribeSubject ToneDur
                    -> PropertyMapping(DueTime) => #4
                    #2, #4 -> Delay(DueTime=PT0.3S)
                    -> IntProperty(Value=3)
                    -> MulticastSubject StopSound
                    -> FloatProperty(Value=7)
                    -> MulticastSubject Tone
                    -> Take(Count=1)
                    -> WorkflowOutput
                #1 -> Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=3))
                    -> WorkflowOutput
                -> SelectMany 7.5Khz => #7
                    SubscribeSubject 7.5kHz
                    -> Sink SetLevel
                        WorkflowInput Source1
                        -> IntProperty(Value=90)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=229)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    -> MulticastSubject Freq => #2
                    SubscribeSubject ToneDur
                    -> PropertyMapping(DueTime) => #4
                    #2, #4 -> Delay(DueTime=PT0.3S)
                    -> IntProperty(Value=3)
                    -> MulticastSubject StopSound
                    -> FloatProperty(Value=7.5)
                    -> MulticastSubject Tone
                    -> Take(Count=1)
                    -> WorkflowOutput
                #1 -> Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=4))
                    -> WorkflowOutput
                -> SelectMany 8.6Khz => #9
                    SubscribeSubject 8.6kHz
                    -> Sink SetLevel
                        WorkflowInput Source1
                        -> IntProperty(Value=90)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=229)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    -> MulticastSubject Freq => #2
                    SubscribeSubject ToneDur
                    -> PropertyMapping(DueTime) => #4
                    #2, #4 -> Delay(DueTime=PT0.3S)
                    -> IntProperty(Value=3)
                    -> MulticastSubject StopSound
                    -> FloatProperty(Value=8.6)
                    -> MulticastSubject Tone
                    -> Take(Count=1)
                    -> WorkflowOutput
                #1 -> Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=5))
                    -> WorkflowOutput
                -> SelectMany 9.2Khz => #11
                    SubscribeSubject 9.2kHz
                    -> Sink SetLevel
                        WorkflowInput Source1
                        -> IntProperty(Value=90)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=229)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    -> MulticastSubject Freq => #2
                    SubscribeSubject ToneDur
                    -> PropertyMapping(DueTime) => #4
                    #2, #4 -> Delay(DueTime=PT0.3S)
                    -> IntProperty(Value=3)
                    -> MulticastSubject StopSound
                    -> FloatProperty(Value=9.2)
                    -> MulticastSubject Tone
                    -> Take(Count=1)
                    -> WorkflowOutput
                #1 -> Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> SelectMany 5.3Khz => #13
                    SubscribeSubject 5.3kHz
                    -> Sink SetLevel
                        WorkflowInput Source1
                        -> IntProperty(Value=90)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=229)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    -> MulticastSubject Freq => #2
                    SubscribeSubject ToneDur
                    -> PropertyMapping(DueTime) => #4
                    #2, #4 -> Delay(DueTime=PT0.3S)
                    -> IntProperty(Value=3)
                    -> MulticastSubject StopSound
                    -> FloatProperty(Value=5.3)
                    -> MulticastSubject Tone
                    -> Take(Count=1)
                    -> WorkflowOutput
                #1 -> Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=7))
                    -> WorkflowOutput
                -> SelectMany 16kHz => #15
                    SubscribeSubject 16kHz
                    -> Sink SetLevel
                        WorkflowInput Source1
                        -> IntProperty(Value=90)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=229)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    -> MulticastSubject Freq => #2
                    SubscribeSubject ToneDur
                    -> PropertyMapping(DueTime) => #4
                    #2, #4 -> Delay(DueTime=PT0.3S)
                    -> IntProperty(Value=3)
                    -> MulticastSubject StopSound
                    -> FloatProperty(Value=16)
                    -> MulticastSubject Tone
                    -> Take(Count=1)
                    -> WorkflowOutput
                #1 -> Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=6))
                    -> WorkflowOutput
                -> SelectMany 12.1khz => #17
                    SubscribeSubject 12.1kHz
                    -> Sink SetLevel
                        WorkflowInput Source1
                        -> IntProperty(Value=90)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=229)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    -> MulticastSubject Freq => #2
                    SubscribeSubject ToneDur
                    -> PropertyMapping(DueTime) => #4
                    #2, #4 -> Delay(DueTime=PT0.3S)
                    -> IntProperty(Value=3)
                    -> MulticastSubject StopSound
                    -> FloatProperty(Value=12.1)
                    -> MulticastSubject Tone
                    -> Take(Count=1)
                    -> WorkflowOutput
                #3, #13, #5, #7, #9, #11, #17, #15 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #10, #7, #4 -> Merge
            -> Disable SelectMany Start_Timer
                Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.001S)
                -> MulticastSubject Time => #1
                SubscribeSubject TrialEnd
                -> Condition => #3
                    WorkflowInput Source1
                    -> WorkflowOutput
                #1, #3 -> TakeUntil

                Disable WorkflowInput Source1
                -> Disable WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Condition
            WorkflowInput Source1 => #0
            SubscribeSubject Anti_Bias_Window
            -> PropertyMapping(Value) => #2
            #0, #2 -> LessThan(Operand=IntProperty(Value=20))
            -> WorkflowOutput
        -> GroupWorkflow Anti_Bias_OFF => #4
            WorkflowInput Source1
            -> SelectMany Create_Discrete_Uniform
                Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=7)
                -> Bonsai.Numerics.Distributions.Sample
                -> Take(Count=1)
                -> WorkflowOutput
            -> GroupWorkflow Random_Tone
                WorkflowInput Source1
                -> Take(Count=1) => #1
                -> Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=0))
                    -> WorkflowOutput
                -> SelectMany 4Khz => #3
                    SubscribeSubject 4kHz
                    -> Sink SetLevel
                        WorkflowInput Source1
                        -> IntProperty(Value=90)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=229)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    -> MulticastSubject Freq => #2
                    SubscribeSubject ToneDur
                    -> PropertyMapping(DueTime) => #4
                    #2, #4 -> Delay(DueTime=PT0.3S)
                    -> IntProperty(Value=3)
                    -> MulticastSubject StopSound
                    -> FloatProperty(Value=4)
                    -> MulticastSubject Tone
                    -> Take(Count=1)
                    -> WorkflowOutput
                #1 -> Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=2))
                    -> WorkflowOutput
                -> SelectMany 7Khz => #5
                    SubscribeSubject 7kHz
                    -> Sink SetLevel
                        WorkflowInput Source1
                        -> IntProperty(Value=90)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=229)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    -> MulticastSubject Freq => #2
                    SubscribeSubject ToneDur
                    -> PropertyMapping(DueTime) => #4
                    #2, #4 -> Delay(DueTime=PT0.3S)
                    -> IntProperty(Value=3)
                    -> MulticastSubject StopSound
                    -> FloatProperty(Value=7)
                    -> MulticastSubject Tone
                    -> Take(Count=1)
                    -> WorkflowOutput
                #1 -> Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=3))
                    -> WorkflowOutput
                -> SelectMany 7.5Khz => #7
                    SubscribeSubject 7.5kHz
                    -> Sink SetLevel
                        WorkflowInput Source1
                        -> IntProperty(Value=90)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=229)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    -> MulticastSubject Freq => #2
                    SubscribeSubject ToneDur
                    -> PropertyMapping(DueTime) => #4
                    #2, #4 -> Delay(DueTime=PT0.3S)
                    -> IntProperty(Value=3)
                    -> MulticastSubject StopSound
                    -> FloatProperty(Value=7.5)
                    -> MulticastSubject Tone
                    -> Take(Count=1)
                    -> WorkflowOutput
                #1 -> Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=4))
                    -> WorkflowOutput
                -> SelectMany 8.6Khz => #9
                    SubscribeSubject 8.6kHz
                    -> Sink SetLevel
                        WorkflowInput Source1
                        -> IntProperty(Value=90)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=229)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    -> MulticastSubject Freq => #2
                    SubscribeSubject ToneDur
                    -> PropertyMapping(DueTime) => #4
                    #2, #4 -> Delay(DueTime=PT0.3S)
                    -> IntProperty(Value=3)
                    -> MulticastSubject StopSound
                    -> FloatProperty(Value=8.6)
                    -> MulticastSubject Tone
                    -> Take(Count=1)
                    -> WorkflowOutput
                #1 -> Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=5))
                    -> WorkflowOutput
                -> SelectMany 9.2Khz => #11
                    SubscribeSubject 9.2kHz
                    -> Sink SetLevel
                        WorkflowInput Source1
                        -> IntProperty(Value=90)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=229)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    -> MulticastSubject Freq => #2
                    SubscribeSubject ToneDur
                    -> PropertyMapping(DueTime) => #4
                    #2, #4 -> Delay(DueTime=PT0.3S)
                    -> IntProperty(Value=3)
                    -> MulticastSubject StopSound
                    -> FloatProperty(Value=9.2)
                    -> MulticastSubject Tone
                    -> Take(Count=1)
                    -> WorkflowOutput
                #1 -> Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> SelectMany 5.3Khz => #13
                    SubscribeSubject 5.3kHz
                    -> Sink SetLevel
                        WorkflowInput Source1
                        -> IntProperty(Value=90)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=229)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    -> MulticastSubject Freq => #2
                    SubscribeSubject ToneDur
                    -> PropertyMapping(DueTime) => #4
                    #2, #4 -> Delay(DueTime=PT0.3S)
                    -> IntProperty(Value=3)
                    -> MulticastSubject StopSound
                    -> FloatProperty(Value=5.3)
                    -> MulticastSubject Tone
                    -> Take(Count=1)
                    -> WorkflowOutput
                #1 -> Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=7))
                    -> WorkflowOutput
                -> SelectMany 16kHz => #15
                    SubscribeSubject 16kHz
                    -> Sink SetLevel
                        WorkflowInput Source1
                        -> IntProperty(Value=90)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=229)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    -> MulticastSubject Freq => #2
                    SubscribeSubject ToneDur
                    -> PropertyMapping(DueTime) => #4
                    #2, #4 -> Delay(DueTime=PT0.3S)
                    -> IntProperty(Value=3)
                    -> MulticastSubject StopSound
                    -> FloatProperty(Value=16)
                    -> MulticastSubject Tone
                    -> Take(Count=1)
                    -> WorkflowOutput
                #1 -> Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=6))
                    -> WorkflowOutput
                -> SelectMany 12.1khz => #17
                    SubscribeSubject 12.1kHz
                    -> Sink SetLevel
                        WorkflowInput Source1
                        -> IntProperty(Value=90)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=229)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    -> MulticastSubject Freq => #2
                    SubscribeSubject ToneDur
                    -> PropertyMapping(DueTime) => #4
                    #2, #4 -> Delay(DueTime=PT0.3S)
                    -> IntProperty(Value=3)
                    -> MulticastSubject StopSound
                    -> FloatProperty(Value=12.1)
                    -> MulticastSubject Tone
                    -> Take(Count=1)
                    -> WorkflowOutput
                #3, #13, #5, #7, #9, #11, #17, #15 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            -> Disable Merge
            -> Disable SelectMany Start_Timer
                Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.001S)
                -> MulticastSubject Time => #1
                SubscribeSubject TrialEnd
                -> Condition => #3
                    WorkflowInput Source1
                    -> WorkflowOutput
                #1, #3 -> TakeUntil

                Disable WorkflowInput Source1
                -> Disable WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        #2, #4 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany GoCue => #2
        WorkflowInput Source1 => #0
        SubscribeSubject GoCueDur
        -> PropertyMapping(DueTime) => #2
        #0, #2 -> Delay(DueTime=PT0.3S)
        -> WorkflowOutput
    -> SelectMany Response => #3
        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=1) => #2
        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=2) => #5
        #2, #5 -> Merge
        -> Take(Count=1)
        -> Sink ResetSpouts
            SubscribeSubject Beam1Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BooleanProperty(Value=true)
            -> MulticastSubject Beam1Bool

            SubscribeSubject Beam2Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BooleanProperty(Value=true)
            -> MulticastSubject Beam2Bool
        -> Sink RecordFirstLick
            WorkflowInput Source1
            -> MulticastSubject FirstLick
            -> WorkflowOutput
        -> Take(Count=1) => #10
        -> Equal(Operand=IntProperty(Value=1)) => #11
        SubscribeSubject Tone => #12
        -> LessThan(Operand=IntProperty(Value=8)) => #13
        #11, #13 -> Zip
        -> LogicalAnd
        -> Condition => #16
            WorkflowInput Source1
            -> WorkflowOutput
        #12 -> GreaterThan(Operand=IntProperty(Value=8)) => #17
        #11, #17 -> Zip
        -> LogicalAnd
        -> Disable Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> Condition => #21
            WorkflowInput Source1
            -> WorkflowOutput
        #10 -> Equal(Operand=IntProperty(Value=2)) => #22
        #22, #17 -> Zip
        -> LogicalAnd
        -> Condition => #25
            WorkflowInput Source1
            -> WorkflowOutput
        #16, #25 -> Merge
        -> BooleanProperty(Value=true) => #27
        #22, #13 -> Zip
        -> LogicalAnd
        -> Disable Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> Condition => #31
            WorkflowInput Source1
            -> WorkflowOutput
        #21, #31 -> Merge
        -> BooleanProperty(Value=false) => #33
        #27, #33 -> Merge
        -> MulticastSubject Correct => #35
        -> Take(Count=1) => #36
        #35 -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1) => #38
        SubscribeSubject CorrectCount => #39
        #38, #39 -> Zip
        -> Take(Count=1)
        -> Add => #42
        #35 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=0) => #44
        #44, #39 -> Zip
        -> Add => #46
        #42, #46 -> Merge
        -> MulticastSubject CorrectCount => #48
        #36, #48 -> Zip
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    -> BooleanProperty(Value=false)
    -> MulticastSubject AbortTrial => #5
    SubscribeSubject ResponseWindow
    -> PropertyMapping(DueTime) => #7
    #2, #7 -> Delay(DueTime=PT1S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject AbortTrial => #10
    #5, #10 -> Merge => #11
    -> Condition
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> SelectMany Feedback => #13
        SubscribeSubject Correct => #0
        -> Condition Yes
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany Success
            SubscribeSubject FirstLick => #0
            -> Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            -> SelectMany RewardRight => #2
                WorkflowInput Source1
                -> Disable SelectMany RewardTone(Description=SoundCard)
                    SubscribeSubject RewardDur
                    -> PropertyMapping(DueTime) => #1
                    WorkflowInput Source1 => #2
                    ExternalizedMapping(SoundLevel) => #3
                    Source2=#2, Source2=#3 -> Sink SetLevel => #4
                        ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                        WorkflowInput Source1 => #1
                        #1, #0 -> IntProperty(Value=80)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=360)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    SubscribeSubject RewardID
                    -> PropertyMapping(Value) => #6
                    #4, #6 -> IntProperty(Value=5)
                    -> Take(Count=1)
                    -> MulticastSubject SoundIndex
                    -> Timestamp
                    -> MemberSelector(Selector=Timestamp.TimeOfDay)
                    -> MulticastSubject RewardToneTime => #12
                    #12, #1 -> Delay(DueTime=PT0.8S)
                    -> WorkflowOutput
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve)
                -> MulticastSubject BehModule => #3
                SubscribeSubject RightValveTime
                -> PropertyMapping(DueTime) => #5
                #3, #5 -> Delay(DueTime=PT0.046S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve)
                -> MulticastSubject BehModule
                -> IntProperty(Value=1)
                -> MulticastSubject "RewSide "
                -> WorkflowOutput
            #0 -> Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> SelectMany RewardLeft => #4
                WorkflowInput Source1
                -> Disable SelectMany RewardTone(Description=SoundCard)
                    SubscribeSubject RewardDur
                    -> PropertyMapping(DueTime) => #1
                    WorkflowInput Source1 => #2
                    ExternalizedMapping(SoundLevel) => #3
                    Source2=#2, Source2=#3 -> Sink SetLevel => #4
                        ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                        WorkflowInput Source1 => #1
                        #1, #0 -> IntProperty(Value=80)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=360)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    SubscribeSubject RewardID
                    -> PropertyMapping(Value) => #6
                    #4, #6 -> IntProperty(Value=5)
                    -> Take(Count=1)
                    -> MulticastSubject SoundIndex
                    -> Timestamp
                    -> MemberSelector(Selector=Timestamp.TimeOfDay)
                    -> MulticastSubject RewardToneTime => #12
                    #12, #1 -> Delay(DueTime=PT0.8S)
                    -> WorkflowOutput
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke1Valve)
                -> MulticastSubject BehModule => #3
                SubscribeSubject LeftValveTime
                -> PropertyMapping(DueTime) => #5
                #3, #5 -> Delay(DueTime=PT0.047S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve)
                -> MulticastSubject BehModule
                -> IntProperty(Value=0)
                -> MulticastSubject "RewSide "
                -> WorkflowOutput
            #4, #2 -> Merge
            -> WorkflowOutput
        -> IntProperty(Value=1) => #3
        #0 -> Condition No
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany Failure
            WorkflowInput Source1
            -> Disable IntProperty(Value=1)
            -> Disable MulticastSubject Attempts
            -> SelectMany Timeout
                WorkflowInput Source1 => #0
                SubscribeSubject TimeoutDuration
                -> PropertyMapping(DueTime) => #2
                #0, #2 -> Delay(DueTime=PT3S)
                -> WorkflowOutput
            -> WorkflowOutput
        -> IntProperty(Value=0) => #6
        #3, #6 -> Merge
        -> MulticastSubject TrialOutcome => #8
        -> Take(Count=1) => #9
        #8 -> Disable IntProperty(Value=1) => #10
        Disable SubscribeSubject RewardCount => #11
        #10, #11 -> Disable Zip
        -> Disable Take(Count=1)
        -> Disable Add
        -> Disable MulticastSubject RewardCount => #15
        #9, #15 -> Zip
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    #11 -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> IntProperty(Value=-1)
    -> MulticastSubject TrialOutcome => #16
    #13, #16 -> Merge
    -> Sink IncrementTrial
        SubscribeSubject TrialNumber => #0
        IntProperty(Value=1) => #1
        #0, #1 -> Zip
        -> Add
        -> MulticastSubject TrialNumber
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput
    #2, #3 -> GroupWorkflow Record_Latency
        SubscribeSubject TrialEnd
        -> Condition => #1
            WorkflowInput Source1
            -> WorkflowOutput
        WorkflowInput Source1
        -> SelectMany Start_Timer => #3
            Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.001S)
            -> MulticastSubject Time
            -> WorkflowOutput
        WorkflowInput Source2 => #4
        #1, #4 -> Merge => #5
        #3, #5 -> TakeUntil
        -> TakeLast(Count=1)
        -> MulticastSubject "Response_Latency (ms)"
        -> WorkflowOutput
-> Sink EndTrial
    WorkflowInput Source1
    -> BooleanProperty(Value=true)
    -> MulticastSubject TrialEnd
    -> WorkflowOutput
-> Repeat => #14
#14, #7 -> TakeUntil
-> WorkflowOutput

ExternalizedMapping(Data_Path, Exp_Name, Animal_ID)
-> GroupWorkflow Control_Parameters
    ExternalizedMapping(Value(DisplayName=Data_Path))
    -> StringProperty(Value=../../Data) => #1
    ExternalizedMapping(Value(DisplayName=Exp_Name))
    -> StringProperty(Value=AUDITORY_DISCRIMINATION_PSYCHOMETRIC) => #3
    ExternalizedMapping(Value(DisplayName=Animal_ID))
    -> StringProperty(Value=QP019)
    -> BehaviorSubject Animal_ID => #6
    IntProperty(Value=0)
    -> Timestamp => #8
    -> MemberSelector(Selector=Timestamp.DateTime.Year) => #9
    #8 -> MemberSelector(Selector=Timestamp.DateTime.Month) => #10
    #8 -> MemberSelector(Selector=Timestamp.Date.Day) => #11
    #9, #10, #11 -> Zip
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1.toString() + "_" + Item2.toString() + "_" + Item3.toString() as date
        )
    -> MemberSelector(Selector=date) => #14
    #1, #3, #6, #14 -> Zip => #15
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Trial_Summary.csv" as Trial_Summary_File_Name
        )
    -> MemberSelector(Selector=Trial_Summary_File_Name)
    -> BehaviorSubject Trial_File_Name
    #15 -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Detected_Licks.csv" as Licks_File_Name
        )
    -> MemberSelector(Selector=Licks_File_Name)
    -> BehaviorSubject Licks_File_Name
    #15 -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Video_data.avi" as Video_File_Name
        )
    -> MemberSelector(Selector=Video_File_Name)
    -> BehaviorSubject Video_File_Name
    #15 -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Video_timestamps.txt" as Video_Timestamps_File_Name
        )
    -> MemberSelector(Selector=Video_Timestamps_File_Name)
    -> BehaviorSubject Video_Timestamps_File_Name

GroupWorkflow Save_Data
    SubscribeSubject FirstLick => #0
    SubscribeSubject TrialOutcome => #1
    SubscribeSubject TrialEnd => #2
    SubscribeSubject Tone => #3
    SubscribeSubject Animal_ID => #4
    SubscribeSubject "RewSide " => #5
    SubscribeSubject ITI => #6
    SubscribeSubject TrialNumber => #7
    SubscribeSubject AbortTrial => #8
    SubscribeSubject Correct => #9
    #4, #7, #3, #0, #9, #5 -> CombineLatest => #10
    SubscribeSubject ResponseWindow => #11
    SubscribeSubject GoCueDur => #12
    SubscribeSubject CorrectCount => #13
    #1, #8, #13, #12, #6, #11 -> CombineLatest => #14
    #10, #14 -> CombineLatest => #15
    SubscribeSubject Trial_File_Name
    -> PropertyMapping(FileName) => #17
    SubscribeSubject "Response_Latency (ms)" => #18
    #15, #18 -> CombineLatest => #19
    #19, #2 -> Sample
    -> Timestamp => #21
    -> MemberSelector(Selector=Value) => #22
    #21 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #23
    #22, #23 -> Zip
    -> Bonsai.Scripting.ExpressionTransform => #25
      Expression:
        new(
        Item1.Item1.Item1.Item1 as Animal_ID,
        Item1.Item1.Item1.Item2 as TrialNumber,
        Item1.Item1.Item1.Item3 as Tone,
        Item1.Item1.Item1.Item4 as FirstLick,
        Item1.Item1.Item1.Item5 as Correct,
        Item1.Item1.Item1.Item6 as Rewside,
        Item1.Item1.Item2.Item1 as TrialOutcome,
        Item1.Item1.Item2.Item2 as AbortTrial,
        Item1.Item1.Item2.Item3 as CorrectCount,
        Item1.Item1.Item2.Item4 as GoCueDur,
        Item1.Item1.Item2.Item5 as ITI,
        Item1.Item1.Item2.Item6 as ReponseWindow,
        Item1.Item2 as Response_Latency,
        Item2 as Time
        )
    #25, #17 -> Bonsai.IO.CsvWriter
      FileName=../../Data/TEST/AUDITORY_DISCRIMINATION_PSYCHOMETRIC_TEST_2022_8_1/Trial_Summary.csv
      Append=true
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true
    -> WorkflowOutput

    SubscribeSubject Beam1Bool => #28
    -> Timestamp => #29
    -> MemberSelector(Selector=Value) => #30
    #29 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #31
    #28 -> StringProperty(Value=Beam1Bool) => #32
    #30, #31, #32 -> Zip => #33
    SubscribeSubject Beam2Bool => #34
    -> Timestamp => #35
    -> MemberSelector(Selector=Value) => #36
    #35 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #37
    #34 -> StringProperty(Value=Beam2Bool) => #38
    #36, #37, #38 -> Zip => #39
    #33, #39 -> Merge
    -> Bonsai.Scripting.ExpressionTransform => #41
      Expression:
        new(
        Item1 as State,
        Item2 as Time,
        Item3 as Spout
        )
    SubscribeSubject Licks_File_Name
    -> PropertyMapping(FileName) => #43
    #41, #43 -> Bonsai.IO.CsvWriter
      FileName=../../Data/TEST/AUDITORY_DISCRIMINATION_PSYCHOMETRIC_TEST_2022_8_1/Detected_Licks.csv
      Delimiter=","
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true

GroupWorkflow "Stats "
  Description:
    Light Blue = Percent_Correct
    Red = Percent_Right_Licks
    Orange = Percent_Abort_Trial
    Dark Blue = Normalised Response Latency
  Workflow
    GroupWorkflow Percent_Correct => #0
        SubscribeSubject Visualizer_Window_Size => #0
        -> PropertyMapping(Value) => #1
        #0 -> PropertyMapping(Count) => #2
        SubscribeSubject CorrectCount => #3
        SubscribeSubject AbortTrial
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> Disable SubscribeSubject TrialNumber
        -> FloatProperty(Value=1)
        -> Accumulate
        -> Subtract(Operand=FloatProperty(Value=1)) => #9
        #3, #9 -> Zip
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> GreaterThan(Operand=FloatProperty(Value=0))
            -> WorkflowOutput
        -> Divide => #12
        #12, #2 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #15
        #15, #1 -> Divide(Operand=DoubleProperty(Value=20))
        -> WorkflowOutput
    GroupWorkflow Percent_Abort_Trial => #1
        SubscribeSubject Visualizer_Window_Size => #0
        -> PropertyMapping(Value) => #1
        #0 -> PropertyMapping(Count) => #2
        SubscribeSubject TrialNumber
        -> FloatProperty(Value=1)
        -> Accumulate
        -> Subtract(Operand=FloatProperty(Value=1)) => #6
        SubscribeSubject AbortTrial => #7
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1) => #9
        #7 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=0) => #11
        #9, #11 -> Merge
        -> Accumulate => #13
        #13, #6 -> Zip
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> GreaterThan(Operand=FloatProperty(Value=0))
            -> WorkflowOutput
        -> Divide => #16
        #16, #2 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #19
        #19, #1 -> Divide(Operand=DoubleProperty(Value=20))
        -> WorkflowOutput
    GroupWorkflow Percent_First_Lick_Right => #2
        SubscribeSubject Anti_Bias_Window => #0
        -> PropertyMapping(Value) => #1
        #0 -> PropertyMapping(Count) => #2
        SubscribeSubject FirstLick => #3
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> IntProperty(Value=0) => #5
        #3 -> Condition
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> IntProperty(Value=1) => #7
        #5, #7 -> Merge => #8
        #8, #2 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #11
        #11, #1 -> Divide(Operand=DoubleProperty(Value=20))
        -> MulticastSubject Percent_Right_Licks
        -> WorkflowOutput
    GroupWorkflow Average_Normalised_Latency => #3
        SubscribeSubject Visualizer_Window_Size => #0
        -> PropertyMapping(Value) => #1
        #0 -> PropertyMapping(Count) => #2
        SubscribeSubject "Response_Latency (ms)" => #3
        #3, #2 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #6
        #6, #1 -> Divide(Operand=DoubleProperty(Value=20)) => #7
        SubscribeSubject ResponseWindow
        -> MemberSelector(Selector=TotalSeconds)
        -> Multiply(Operand=DoubleProperty(Value=1000))
        -> PropertyMapping(Value) => #11
        #7, #11 -> Divide(Operand=DoubleProperty(Value=1000))
        -> WorkflowOutput
    DoubleProperty(Value=0) => #4
    #0, #4 -> Merge => #5
    DoubleProperty(Value=0) => #6
    #1, #6 -> Merge => #7
    DoubleProperty(Value=0) => #8
    #2, #8 -> Merge => #9
    DoubleProperty(Value=0) => #10
    #3, #10 -> Merge => #11
    #5, #7, #9, #11 -> CombineLatest
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1 as Percent_Correct,
        Item2 as Percent_Abort_Trial,
        Item3 as Right_Bias,
        Item4 as Normalized_Response_Latency
        )
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(ValueSelector="Percent_Correct,Percent_Abort_Trial,Right_Bias,Normalized_Response_Latency", Capacity=nil)
    -> WorkflowOutput

Disable Timer(DueTime=PT0S, Period=PT1S)
-> Disable SelectMany Sim_Mouse
    Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
    -> Bonsai.Numerics.Distributions.Sample => #1
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> SelectMany => #3
        BooleanProperty(Value=false)
        -> MulticastSubject Beam1Bool
        -> BooleanProperty(Value=true)
        -> MulticastSubject Beam1Bool
        -> Take(Count=1)
        -> WorkflowOutput
    #1 -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> SelectMany => #5
        BooleanProperty(Value=false)
        -> MulticastSubject Beam2Bool
        -> BooleanProperty(Value=true)
        -> MulticastSubject Beam2Bool
        -> Take(Count=1)
        -> WorkflowOutput
    #3, #5 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
