<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:p2="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p3="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:gli="clr-namespace:Bonsai.Shaders.Input;assembly=Bonsai.Shaders"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>HarpBeh</Name>
        <Description>Workflows to connect and interact with Harp Behaviour Module

Will initialise device and create subjects:

BehModuleInput -- Messagebytes -- output from devicecommand node to issue outputs to harp board

BehBytes -- bytesarray -- messagebytes output to be written to .bin file with MatrixWriter node

BeamXbool -- bool -- readout  for hi/lo state of photogate/lickspout connected to ethernet breakout ports
</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Beam0Bool</Name>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Beam1Bool</Name>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Beam2Bool</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Address>32</harp:Address>
              <harp:PayloadType>U8</harp:PayloadType>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>BehModule</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ByteProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>BehBytes</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BehModule</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:Device">
                <harp:PortName>COM1</harp:PortName>
                <harp:DeviceState>Active</harp:DeviceState>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:LedState>On</harp:LedState>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disable</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>Emulate</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Equal">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Condition">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="p1:BehaviorEvent">
              <p1:Type>Input</p1:Type>
              <p1:Mask>Poke0InfraRedBeam</p1:Mask>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Beam0Bool</Name>
            </Expression>
            <Expression xsi:type="p1:BehaviorEvent">
              <p1:Type>Input</p1:Type>
              <p1:Mask>Poke1InfraRedBeam</p1:Mask>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Beam1Bool</Name>
            </Expression>
            <Expression xsi:type="p1:BehaviorEvent">
              <p1:Type>Input</p1:Type>
              <p1:Mask>Poke2InfraRedBeam</p1:Mask>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Beam2Bool</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>MessageBytes</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehBytes</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BehBytes</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>C:\bonsai\bonsaiprotocols\base4harp\Beh_Hit_Data.bin</dsp:Path>
                <dsp:Suffix>FileCount</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>Emulate</Name>
                <Description>Runs when emulate is True</Description>
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              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="16" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="16" To="19" Label="Source1" />
            <Edge From="16" To="21" Label="Source1" />
            <Edge From="16" To="23" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>HarpSoundCard</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>PlaySound</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:Device">
                <harp:PortName>COM2</harp:PortName>
                <harp:DeviceState>Active</harp:DeviceState>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:LedState>On</harp:LedState>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disable</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Soundcard?</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SoundIndex</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp</Selector>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>Emulate</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Equal">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Condition">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>SoundIndex</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SoundIndex</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateHarpMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U16</harp:PayloadType>
                <harp:Payload>0</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>PlaySound</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Soundcard?" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Soundcard?</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="14" Label="Source1" />
            <Edge From="2" To="12" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="13" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="16" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Variables</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>80</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Stim1Amp</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>80</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Stim2Amp</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>3</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>StimID</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>7</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>ViolID</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>6</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>GoCueID</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Stimulus Duration" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.4</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BehTraining:TimeFromFloat.bonsai" />
            <Expression xsi:type="BehaviorSubject">
              <Name>Stim1Dur</Name>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Stim2Dur</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Go Cue Duration" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.4</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BehTraining:TimeFromFloat.bonsai" />
            <Expression xsi:type="BehaviorSubject">
              <Name>GoCueDur</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>WaitForResponse</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateRandom">
                <p2:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:CreateContinuousUniform">
                <p3:Lower>1</p3:Lower>
                <p3:Upper>3</p3:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>DelayDistribution</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>DelayPeriod</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>OkToPress?</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Correct</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
            <Expression xsi:type="PublishSubject">
              <Name>DrawQuad</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>TrialOutcome</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>FirstLick</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>SubsequentLick</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gli:KeyDown">
                <gli:Key>End</gli:Key>
                <gli:Modifiers xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>ExpEnd</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>OkToLick?</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TimeSpanProperty">
                <Value>PT0.4S</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>ViolDur</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="BehaviorSubject">
                <Name>Post-violation Delay</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="BehaviorSubject">
                <Name>ViolationCounter</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>EarlyLick</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>TrialEnd</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TimeSpanProperty">
                <Value>PT0.8S</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>RewardDur</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Timestamp</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TimeOfDay</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>RewardToneTime</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>RewardID</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="41" To="42" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="47" To="48" Label="Source1" />
            <Edge From="49" To="50" Label="Source1" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="53" To="54" Label="Source1" />
            <Edge From="55" To="56" Label="Source1" />
            <Edge From="57" To="58" Label="Source1" />
            <Edge From="59" To="60" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Sink">
          <Name>SetSpouts</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Sink">
          <Name>GenAmps</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SelectMany">
          <Name>Trial</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SelectMany">
          <Name>ITI</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Sink">
          <Name>PrepNewTrial</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>ExpEnd</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="WorkflowOutput" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Save_Data</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Up</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>ViolTone</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Sink">
              <Name>SetLevel</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="SoundLevel" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>300</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Sink">
                    <Name>Left</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:CreateHarpMessage">
                            <harp:MessageType>Write</harp:MessageType>
                            <harp:Address>34</harp:Address>
                            <harp:PayloadType>U16</harp:PayloadType>
                            <harp:Payload>0</harp:Payload>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>PlaySound</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Sink">
                    <Name>Right</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:CreateHarpMessage">
                            <harp:MessageType>Write</harp:MessageType>
                            <harp:Address>35</harp:Address>
                            <harp:PayloadType>U16</harp:PayloadType>
                            <harp:Payload>0</harp:Payload>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>PlaySound</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ViolDur</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ViolID</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SoundIndex" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Sink">
              <Name>PlayTone</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="SoundIndex" />
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>7</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>SoundIndex</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source2" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.4S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Sink">
              <Name>StopSound</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>30</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>SoundIndex</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="6" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="7" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Down</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>GoTone</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Sink">
              <Name>SetLevel</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="SoundLevel" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>300</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Sink">
                    <Name>Left</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:CreateHarpMessage">
                            <harp:MessageType>Write</harp:MessageType>
                            <harp:Address>34</harp:Address>
                            <harp:PayloadType>U16</harp:PayloadType>
                            <harp:Payload>0</harp:Payload>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>PlaySound</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Sink">
                    <Name>Right</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:CreateHarpMessage">
                            <harp:MessageType>Write</harp:MessageType>
                            <harp:Address>35</harp:Address>
                            <harp:PayloadType>U16</harp:PayloadType>
                            <harp:Payload>0</harp:Payload>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>PlaySound</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GoCueID</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SoundIndex" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Sink">
              <Name>PlayTone</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="SoundIndex" />
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>6</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>SoundIndex</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source2" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GoCueDur</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.4S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Sink">
              <Name>StopSound</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>30</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>SoundIndex</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>