WorkflowBuilder(Version=2.7.0)
GroupWorkflow CameraStreaming
    Bonsai.Osc.CreateTcpServer(Name=Emitter, Port=1234, NoDelay=false, AllowNatTraversal=false)

    Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
    -> Bonsai.Dsp.ConvertToArray(Depth=nil)
    -> Bonsai.Osc.SendMessage(Connection=Emitter, Address=/tcpimage)

GroupWorkflow HarpBeh
  Description:
    Workflows to connect and interact with Harp Behaviour Module

    Will initialise device and create subjects:

    BehModuleInput -- Messagebytes -- output from devicecommand node to issue outputs to harp board

    BehBytes -- bytesarray -- messagebytes output to be written to .bin file with MatrixWriter node

    BeamXbool -- bool -- readout  for hi/lo state of photogate/lickspout connected to ethernet breakout ports
  Workflow
    BooleanProperty(Value=false)
    -> BehaviorSubject Beam0Bool
    -> BehaviorSubject Beam1Bool
    -> BehaviorSubject Beam2Bool

    BooleanProperty(Value=false)
    -> Bonsai.Harp.Format(MessageType=Write, Address=32, PayloadType=U8)
    -> BehaviorSubject BehModule

    ByteProperty(Value=0)
    -> ToArray
    -> BehaviorSubject BehBytes

    SubscribeSubject BehModule
    -> Skip(Count=1)
    -> Bonsai.Harp.Device(PortName=COM4, DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false) => #12
    Disable SubscribeSubject Emulate
    -> Disable Equal(Operand=BooleanProperty(Value=false))
    -> Disable Condition => #15
        WorkflowInput Source1
        -> WorkflowOutput
    #12, #15 -> Disable SubscribeWhen => #16
    -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke0InfraRedBeam)
    -> MulticastSubject Beam0Bool
    #16 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke1InfraRedBeam)
    -> MulticastSubject Beam1Bool
    #16 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke2InfraRedBeam)
    -> MulticastSubject Beam2Bool
    #16 -> MemberSelector(Selector=MessageBytes)
    -> MulticastSubject BehBytes

    SubscribeSubject BehBytes
    -> Bonsai.Dsp.MatrixWriter(Path=C:\bonsai\bonsaiprotocols\base4harp\Beh_Hit_Data.bin, Suffix=FileCount, Overwrite=false, Layout=ColumnMajor)

    Disable GroupWorkflow Emulate(Description="Runs when emulate is True")
        Bonsai.Windows.Input.KeyDown(Filter=Down, SuppressRepetitions=false)
        -> BooleanProperty(Value=true) => #1
        Bonsai.Windows.Input.KeyUp(Filter=Down)
        -> BooleanProperty(Value=false) => #3
        #1, #3 -> Merge => #4
        SubscribeSubject Emulate
        -> Condition => #6
            WorkflowInput Source1
            -> WorkflowOutput
        #4, #6 -> SubscribeWhen
        -> MulticastSubject Beam0Bool

        Bonsai.Windows.Input.KeyDown(Filter=Up, SuppressRepetitions=false)
        -> BooleanProperty(Value=true) => #10
        Bonsai.Windows.Input.KeyUp(Filter=Up)
        -> BooleanProperty(Value=false) => #12
        #10, #12 -> Merge => #13
        SubscribeSubject Emulate
        -> Condition => #15
            WorkflowInput Source1
            -> WorkflowOutput
        #13, #15 -> SubscribeWhen
        -> MulticastSubject Beam1Bool

        Bonsai.Windows.Input.KeyDown(Filter=D2, SuppressRepetitions=false)
        -> BooleanProperty(Value=true) => #19
        Bonsai.Windows.Input.KeyUp(Filter=D2)
        -> BooleanProperty(Value=false) => #21
        #19, #21 -> Merge => #22
        SubscribeSubject Emulate
        -> Condition => #24
            WorkflowInput Source1
            -> WorkflowOutput
        #22, #24 -> SubscribeWhen
        -> MulticastSubject Beam2Bool

        Disable Bonsai.Windows.Input.KeyDown(Filter=None, SuppressRepetitions=false)
        -> Disable Bonsai.Audio.PlaySource(DeviceName="Generic Software on Speakers (Realtek High Definition Audio(SST))")

        Bonsai.Audio.CreateAudioContext(SampleRate=0, Refresh=0, Position(X=0, Y=0, Z=0), Velocity(X=0, Y=0, Z=0), Direction(X=-0, Y=-0, Z=-1), Up(X=0, Y=1, Z=0), Gain=1)
        -> Bonsai.Audio.AudioResources
          Buffers
            BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=i03_WhiteNoise, FileName=C:\bonsai\bonsaiprotocols\Sound\toSoundCard\03_WhiteNoise.wav)
            BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=i05_RewardTone_32bit_stereo_nohead, FileName=C:\Users\Dammy\Documents\HarpSoundCard\Interface\toSoundCard\i05_RewardTone_32bit_stereo_nohead.bin)
            BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=i05_GoCue, FileName=C:\Users\Dammy\Documents\HarpSoundCard\Interface\toSoundCard\i05_GoCue.bin)
            BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=i07_ViolationTone, FileName=C:\Users\Dammy\Documents\HarpSoundCard\Interface\toSoundCard\i07_ViolationTone.bin)
            BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=i08_TimeoutTone, FileName=C:\Users\Dammy\Documents\HarpSoundCard\Interface\toSoundCard\i08_TimeoutTone.bin)
            BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=i30_stop, FileName=C:\Users\Dammy\Documents\HarpSoundCard\Interface\toSoundCard\i30_stop.bin)
          Sources
            SourceConfiguration
              Name=WhiteNoise
              BufferName=i02_WhiteNoise
              Gain=1
              Pitch=1
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Initial
            SourceConfiguration
              Name=RewardTone
              BufferName=i05_RewardTone_32bit_stereo_nohead
              Gain=1
              Pitch=1
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Initial
            SourceConfiguration
              Name=GoCue
              BufferName=i05_GoCue
              Gain=1
              Pitch=1
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Initial
            SourceConfiguration
              Name=ViolTone
              BufferName=i07_ViolationTone
              Gain=1
              Pitch=1
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Initial
            SourceConfiguration
              Name=TimeoutTone
              BufferName=i08_TimeoutTone
              Gain=1
              Pitch=1
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Initial
            SourceConfiguration
              Name=Stop
              BufferName=i30_stop
              Gain=1
              Pitch=1
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Initial
        -> Bonsai.Resources.LoadResources

        SubscribeSubject SoundIndex => #32
        SubscribeSubject Soundcard?
        -> Condition => #34
            WorkflowInput Source1
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        #32, #34 -> SubscribeWhen => #35
        -> Condition 2
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=WhiteNoise))
        #35 -> Condition 2
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=WhiteNoise))
        #35 -> Condition 2
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=WhiteNoise))

        BooleanProperty(Value=false)
        -> BehaviorSubject Emulate

GroupWorkflow HarpSoundCard
    SubscribeSubject PlaySound
    -> Skip(Count=1) => #1
    SubscribeSubject Soundcard?
    -> Condition => #3
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=true))
        -> WorkflowOutput
    SubscribeSubject SoundIndex
    -> Skip(Count=1)
    -> Timestamp
    -> MemberSelector(Selector=Timestamp) => #7
    Disable SubscribeSubject Volume
    -> Disable Skip(Count=1)
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #10
      Expression: uint16(it)
    SubscribeSubject Freq
    -> Skip(Count=1)
    -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        @returns(float)
        def process(value):
          return 2**value
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: uint16(it)
    -> Bonsai.Harp.Format(MessageType=Write, Address=32, PayloadType=U16) => #15
    Disable SubscribeSubject PlayTone
    -> Disable Skip(Count=1)
    -> Disable IntProperty(Value=32)
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #19
      Expression: uint16(it)
    #19, #10 -> Disable CombineLatest
    -> Disable SelectMany ToArray
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1) => #1
        #0 -> MemberSelector(Selector=Item2) => #2
        #1, #2 -> Merge
        -> ToArray
        -> WorkflowOutput
    -> Disable IntProperty(Value=1)
    -> Disable Bonsai.Harp.Format(MessageType=Write, Address=36, PayloadType=U16) => #23
    SubscribeSubject StopSound
    -> IntProperty(Value=3)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: byte(it)
    -> Bonsai.Harp.Format(MessageType=Write, Address=33, PayloadType=U8) => #27
    SubscribeSubject Volume
    -> Skip(Count=1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: uint16(it)
    -> Sink
        WorkflowInput Source1
        -> Bonsai.Harp.Format(MessageType=Write, Address=34, PayloadType=U8)
        -> WorkflowOutput
    -> Bonsai.Harp.Format(MessageType=Write, Address=35, PayloadType=U8) => #32
    #23, #15, #27, #32 -> Merge => #33
    #1, #33 -> Merge => #34
    -> Bonsai.Harp.Device(PortName=COM3, DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false) => #35
    #35, #3 -> SubscribeWhen
    #34 -> Timestamp
    -> MemberSelector(Selector=Timestamp) => #38
    #38, #7 -> Zip
    -> Subtract

    IntProperty(Value=0)
    -> BehaviorSubject SoundIndex

    SubscribeSubject SoundIndex
    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U16, Payload=0)
    -> BehaviorSubject PlaySound

    ExternalizedMapping(Value(DisplayName=Soundcard?))
    -> BooleanProperty(Value=true)
    -> BehaviorSubject Soundcard?

    FloatProperty(Value=11.5)
    -> BehaviorSubject Freq

    IntProperty(Value=1000)
    -> BehaviorSubject Volume

    SubscribeSubject Freq
    -> BehaviorSubject PlayTone

    Disable Bonsai.Windows.Input.KeyDown(Filter=End, SuppressRepetitions=false)
    -> IntProperty(Value=3)
    -> BehaviorSubject StopSound

    FloatProperty(Value=11.96578)
    -> BehaviorSubject 4kHz

    FloatProperty(Value=13.96578)
    -> BehaviorSubject 16kHz

ExternalizedMapping(LeftValveTime, RightValveTime, "ITI (ms)", Room_ID, Rig_ID)
-> GroupWorkflow Variables
    IntProperty(Value=0)
    -> BehaviorSubject FirstLick

    Bonsai.Shaders.Input.KeyDown(Key=End, Modifiers=nil)
    -> BehaviorSubject ExpEnd

    BooleanProperty(Value=false)
    -> BehaviorSubject TrialEnd

    IntProperty(Value=0)
    -> BehaviorSubject Tone

    IntProperty(Value=0)
    -> BehaviorSubject "RewSide "

    StringProperty(Value=QP04)
    -> BehaviorSubject MouseID

    FloatProperty(Value=300)
    -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject ToneDur

    ExternalizedMapping(Value(DisplayName=RightValveTime))
    -> FloatProperty(Value=47)
    -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject RightValveTime

    ExternalizedMapping(Value(DisplayName=LeftValveTime))
    -> FloatProperty(Value=46)
    -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject LeftValveTime

    FloatProperty(Value=300)
    -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject GoCueDur

    ExternalizedMapping(Value(DisplayName="ITI (ms)"))
    -> FloatProperty(Value=1000)
    -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject ITI

    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    ExternalizedMapping(Value(DisplayName=Room_ID))
    -> StringProperty(Value=311)
    -> BehaviorSubject Room_ID

    ExternalizedMapping(Value(DisplayName=Rig_ID))
    -> StringProperty(Value=1)
    -> BehaviorSubject Rig_ID

SubscribeSubject ExpEnd => #5
SubscribeSubject ITI
-> PropertyMapping(DueTime)
-> Timer(DueTime=PT1S, Period=PT0S)
-> Sink SetSpouts
    SubscribeSubject Beam1Bool
    -> Condition
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> BooleanProperty(Value=true)
    -> MulticastSubject Beam1Bool

    SubscribeSubject Beam2Bool
    -> Condition
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> BooleanProperty(Value=true)
    -> MulticastSubject Beam2Bool

    SubscribeSubject Beam0Bool
    -> Condition
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> BooleanProperty(Value=true)
    -> MulticastSubject Beam0Bool
-> SelectMany Trial
    WorkflowInput Source1
    -> SelectMany Response
        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=0) => #2
        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=1) => #5
        #2, #5 -> Merge
        -> Take(Count=1)
        -> Sink ResetSpouts
            SubscribeSubject Beam1Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BooleanProperty(Value=true)
            -> MulticastSubject Beam1Bool

            SubscribeSubject Beam2Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BooleanProperty(Value=true)
            -> MulticastSubject Beam2Bool
        -> Sink RecordFirstLick
            WorkflowInput Source1
            -> MulticastSubject FirstLick
            -> WorkflowOutput
        -> Take(Count=1) => #10
        SubscribeSubject Tone => #11
        #11, #10 -> Zip
        -> Equal
        -> Disable Delay(DueTime=PT0.5S)
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany ReleaseReward
        SubscribeSubject FirstLick => #0
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> SelectMany 4Khz
            SubscribeSubject 4kHz
            -> Sink SetLevel
                WorkflowInput Source1
                -> IntProperty(Value=90)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: (it-107.54)/-0.0764
                -> PropertyMapping(Value)
                -> IntProperty(Value=229)
                -> Sink Left
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> Sink Right
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> WorkflowOutput
            -> MulticastSubject Freq => #2
            SubscribeSubject ToneDur
            -> PropertyMapping(DueTime) => #4
            #2, #4 -> Delay(DueTime=PT0.3S)
            -> IntProperty(Value=3)
            -> MulticastSubject StopSound
            -> IntProperty(Value=4)
            -> MulticastSubject Tone
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany '"Go"Cue'
            WorkflowInput Source1 => #0
            SubscribeSubject GoCueDur
            -> PropertyMapping(DueTime) => #2
            #0, #2 -> Delay(DueTime=PT0.3S)
            -> WorkflowOutput
        -> SelectMany RewardLeft
            WorkflowInput Source1
            -> Disable SelectMany RewardTone(Description=SoundCard)
                SubscribeSubject RewardDur
                -> PropertyMapping(DueTime) => #1
                WorkflowInput Source1 => #2
                ExternalizedMapping(SoundLevel) => #3
                Source2=#2, Source2=#3 -> Sink SetLevel => #4
                    ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                    WorkflowInput Source1 => #1
                    #1, #0 -> IntProperty(Value=80)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: (it-107.54)/-0.0764
                    -> PropertyMapping(Value)
                    -> IntProperty(Value=360)
                    -> Sink Left
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> Sink Right
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> WorkflowOutput
                SubscribeSubject RewardID
                -> PropertyMapping(Value) => #6
                #4, #6 -> IntProperty(Value=5)
                -> Take(Count=1)
                -> MulticastSubject SoundIndex
                -> Timestamp
                -> MemberSelector(Selector=Timestamp.TimeOfDay)
                -> MulticastSubject RewardToneTime => #12
                #12, #1 -> Delay(DueTime=PT0.8S)
                -> WorkflowOutput
            -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke1Valve)
            -> MulticastSubject BehModule => #3
            SubscribeSubject LeftValveTime
            -> PropertyMapping(DueTime) => #5
            #3, #5 -> Delay(DueTime=PT0.046S)
            -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve)
            -> MulticastSubject BehModule
            -> WorkflowOutput
        -> IntProperty(Value=0) => #5
        #0 -> Condition
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> SelectMany 16kHz
            SubscribeSubject 16kHz
            -> Sink SetLevel
                WorkflowInput Source1
                -> IntProperty(Value=90)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: (it-107.54)/-0.0764
                -> PropertyMapping(Value)
                -> IntProperty(Value=229)
                -> Sink Left
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> Sink Right
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> WorkflowOutput
            -> MulticastSubject Freq => #2
            SubscribeSubject ToneDur
            -> PropertyMapping(DueTime) => #4
            #2, #4 -> Delay(DueTime=PT0.3S)
            -> IntProperty(Value=3)
            -> MulticastSubject StopSound
            -> IntProperty(Value=16)
            -> MulticastSubject Tone
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany '"Go"Cue'
            WorkflowInput Source1 => #0
            SubscribeSubject GoCueDur
            -> PropertyMapping(DueTime) => #2
            #0, #2 -> Delay(DueTime=PT0.3S)
            -> WorkflowOutput
        -> SelectMany RewardRight
            WorkflowInput Source1
            -> Disable SelectMany RewardTone(Description=SoundCard)
                SubscribeSubject RewardDur
                -> PropertyMapping(DueTime) => #1
                WorkflowInput Source1 => #2
                ExternalizedMapping(SoundLevel) => #3
                Source2=#2, Source2=#3 -> Sink SetLevel => #4
                    ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                    WorkflowInput Source1 => #1
                    #1, #0 -> IntProperty(Value=80)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: (it-107.54)/-0.0764
                    -> PropertyMapping(Value)
                    -> IntProperty(Value=360)
                    -> Sink Left
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> Sink Right
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> WorkflowOutput
                SubscribeSubject RewardID
                -> PropertyMapping(Value) => #6
                #4, #6 -> IntProperty(Value=5)
                -> Take(Count=1)
                -> MulticastSubject SoundIndex
                -> Timestamp
                -> MemberSelector(Selector=Timestamp.TimeOfDay)
                -> MulticastSubject RewardToneTime => #12
                #12, #1 -> Delay(DueTime=PT0.8S)
                -> WorkflowOutput
            -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve)
            -> MulticastSubject BehModule => #3
            SubscribeSubject RightValveTime
            -> PropertyMapping(DueTime) => #5
            #3, #5 -> Delay(DueTime=PT0.047S)
            -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve)
            -> MulticastSubject BehModule
            -> WorkflowOutput
        -> IntProperty(Value=1) => #10
        #5, #10 -> Merge
        -> MulticastSubject "RewSide "
        -> WorkflowOutput
    -> Sink IncrementTrial
        SubscribeSubject TrialNumber => #0
        IntProperty(Value=1) => #1
        #0, #1 -> Zip
        -> Add
        -> MulticastSubject TrialNumber
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput
-> Sink PrepNewTrial
    WorkflowInput Source1
    -> BooleanProperty(Value=true)
    -> MulticastSubject TrialEnd
    -> WorkflowOutput
-> Repeat => #12
#12, #5 -> TakeUntil
-> WorkflowOutput

ExternalizedMapping(Data_Path, Exp_Name, Animal_ID)
-> GroupWorkflow Control_Parameters
    ExternalizedMapping(Value(DisplayName=Data_Path))
    -> StringProperty(Value=../../Data) => #1
    ExternalizedMapping(Value(DisplayName=Exp_Name))
    -> StringProperty(Value=AUDITORY_DISCRIMINATION_LICK_TO_RELEASE) => #3
    ExternalizedMapping(Value(DisplayName=Animal_ID))
    -> StringProperty(Value=TEST)
    -> BehaviorSubject Animal_ID => #6
    IntProperty(Value=0)
    -> Timestamp => #8
    -> MemberSelector(Selector=Timestamp.DateTime.Year) => #9
    #8 -> MemberSelector(Selector=Timestamp.DateTime.Month) => #10
    #8 -> MemberSelector(Selector=Timestamp.Date.Day) => #11
    #9, #10, #11 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1.toString() + "_" + Item2.toString() + "_" + Item3.toString() as date
        )
    -> MemberSelector(Selector=date) => #14
    #1, #3, #6, #14 -> Zip => #15
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Trial_Summary.csv" as Trial_Summary_File_Name
        )
    -> MemberSelector(Selector=Trial_Summary_File_Name)
    -> BehaviorSubject Trial_File_Name
    #15 -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Detected_Licks.csv" as Licks_File_Name
        )
    -> MemberSelector(Selector=Licks_File_Name)
    -> BehaviorSubject Licks_File_Name

GroupWorkflow Save_Data
    SubscribeSubject TrialEnd => #0
    SubscribeSubject "RewSide " => #1
    SubscribeSubject Tone => #2
    SubscribeSubject TrialNumber => #3
    SubscribeSubject Animal_ID => #4
    SubscribeSubject Trial_File_Name
    -> PropertyMapping(FileName) => #6
    SubscribeSubject FirstLick => #7
    #4, #7, #3, #2, #1 -> CombineLatest => #8
    #8, #0 -> Sample
    -> Timestamp => #10
    -> MemberSelector(Selector=Value) => #11
    #10 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #12
    #11, #12 -> Zip
    -> Skip(Count=1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #15
      Expression:
        new(
        Item1.Item1 as Animal_ID,
        Item1.Item2 as FirstLick,
        Item1.Item3 as TrialNumber,
        Item1.Item4 as Tone,
        Item1.Item5 as RewSide,
        Item2 as Time
        )
    #15, #6 -> Bonsai.IO.CsvWriter
      FileName=../../Data/AUDITORY_DISCRIMINATION_LICK_TO_RELEASE_TEST_2022_8_9/Trial_Summary.csv
      Delimiter=","
      Append=true
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true

    SubscribeSubject Beam1Bool => #17
    -> Timestamp => #18
    -> MemberSelector(Selector=Value) => #19
    #18 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #20
    #17 -> StringProperty(Value=Beam1Bool) => #21
    #19, #20, #21 -> Zip => #22
    SubscribeSubject Beam2Bool => #23
    -> Timestamp => #24
    -> MemberSelector(Selector=Value) => #25
    #24 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #26
    #23 -> StringProperty(Value=Beam2Bool) => #27
    #25, #26, #27 -> Zip => #28
    #22, #28 -> Merge
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #30
      Expression:
        new(
        Item1 as State,
        Item2 as Time,
        Item3 as Spout
        )
    SubscribeSubject Licks_File_Name
    -> PropertyMapping(FileName) => #32
    #30, #32 -> Bonsai.IO.CsvWriter
      FileName=../../Data/AUDITORY_DISCRIMINATION_LICK_TO_RELEASE_TEST_2022_8_9/Detected_Licks.csv
      Delimiter=","
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true
