WorkflowBuilder(Version=2.7.0)
GroupWorkflow Params
    Bonsai.IO.CsvReader(FileName=..\Params\Rig_Params.csv, ListSeparator="", SkipRows=0) => #0
    -> Bonsai.Scripting.IronPython.PythonTransform Room_ID
      Script:
        @returns(int)
        def process(value):
          len_output = 3
          param_spacing = 2
          param = 'Room_ID'
          start = value.find(param) + len(param) + param_spacing
          end = start + len_output
          return(int(value[start:end]))
    -> PropertyMapping(Room_ID) => #2
    #0 -> Bonsai.Scripting.IronPython.PythonTransform Rig_ID
      Script:
        @returns(int)
        def process(value):
          len_output = 2
          param_spacing = 2
          param = 'Rig_ID'
          start = value.find(param) + len(param) + param_spacing
          end = start + len_output
          return(int(value[start:end]))
    -> PropertyMapping(Rig_ID) => #4
    #0 -> Bonsai.Scripting.IronPython.PythonTransform Left_Valve
      Script:
        @returns(int)
        def process(value):
          len_output = 2
          param_spacing = 2
          param = 'Left_Valve_Time'
          start = value.find(param) + len(param) + param_spacing
          end = start + len_output
          return(int(value[start:end]))
    -> PropertyMapping("LeftValveTime (ms)") => #6
    #0 -> Bonsai.Scripting.IronPython.PythonTransform Right_Valve
      Script:
        @returns(int)
        def process(value):
          len_output = 2
          param_spacing = 2
          param = 'Right_Valve_Time'
          start = value.find(param) + len(param) + param_spacing
          end = start + len_output
          return(int(value[start:end]))
    -> PropertyMapping("RightValveTime (ms)") => #8
    #2, #4, #6, #8 -> GroupWorkflow Rig_Params
        ExternalizedMapping(Value(DisplayName="RightValveTime (ms)"))
        -> FloatProperty(Value=40)
        -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds
          Expression: TimeSpan.FromMilliseconds(it)
        -> BehaviorSubject RightValveTime

        ExternalizedMapping(Value(DisplayName="LeftValveTime (ms)"))
        -> FloatProperty(Value=40)
        -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds
          Expression: TimeSpan.FromMilliseconds(it)
        -> BehaviorSubject LeftValveTime

        ExternalizedMapping(Value(DisplayName=Room_ID))
        -> IntProperty(Value=404)
        -> BehaviorSubject Room_ID

        ExternalizedMapping(Value(DisplayName=Rig_ID))
        -> IntProperty(Value=40)
        -> BehaviorSubject Rig_ID
    #0 -> Bonsai.Scripting.IronPython.PythonTransform Beh
      Script:
        @returns(str)
        def process(value):
          len_output = 4
          param_spacing = 2
          param = 'Harp_Beh_Port'
          start = value.find(param) + len(param) + param_spacing
          end = start + len_output
          return(value[start:end])
    -> PropertyMapping(PortName) => #11
    Bonsai.IO.CsvReader(FileName=..\Params\Subject_Params.csv, SkipRows=0) => #12
    -> Bonsai.Scripting.IronPython.PythonTransform Subject_ID
      Script:
        param = 'Subject'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> PropertyMapping(Animal_ID) => #14
    #12 -> Bonsai.Scripting.IronPython.PythonTransform AntiBias => #15
      Script:
        param = 'AntiBias'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> Equal(Operand=StringProperty(Value=True))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #18
    #15 -> Equal(Operand=StringProperty(Value=False))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #21
    #18, #21 -> Merge
    -> PropertyMapping(Anti_Bias) => #23
    #12 -> Bonsai.Scripting.IronPython.PythonTransform Emulator => #24
      Script:
        param = 'Emulator'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> Equal(Operand=StringProperty(Value=True))
    -> Condition => #26
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #27
    #26 -> BooleanProperty(Value=false) => #28
    #24 -> Equal(Operand=StringProperty(Value=False))
    -> Condition => #30
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #31
    #27, #31 -> Merge
    -> PropertyMapping(Emulate) => #33
    #30 -> BooleanProperty(Value=true) => #34
    #28, #34 -> Merge => #35
    -> PropertyMapping(True_Harp) => #36
    #11, #36, #33 -> GroupWorkflow HarpBeh
      Description:
        Workflows to connect and interact with Harp Behaviour Module

        Will initialise device and create subjects:

        BehModuleInput -- Messagebytes -- output from devicecommand node to issue outputs to harp board

        BehBytes -- bytesarray -- messagebytes output to be written to .bin file with MatrixWriter node

        BeamXbool -- bool -- readout  for hi/lo state of photogate/lickspout connected to ethernet breakout ports
      Workflow
        BooleanProperty(Value=false)
        -> Bonsai.Harp.Format(MessageType=Write, Address=32, PayloadType=U8)
        -> BehaviorSubject BehModule

        ByteProperty(Value=0)
        -> ToArray
        -> BehaviorSubject BehBytes

        SubscribeSubject BehBytes
        -> Bonsai.Dsp.MatrixWriter(Path=C:\bonsai\bonsaiprotocols\base4harp\Beh_Hit_Data.bin, Suffix=FileCount, Overwrite=false, Layout=ColumnMajor)

        SubscribeSubject BehModule
        -> Skip(Count=1) => #9
        ExternalizedMapping(PortName, True_Harp, Emulate) => #10
        #9, #10 -> GroupWorkflow Device_Emulator
            ExternalizedMapping(Value(DisplayName=True_Harp))
            -> BooleanProperty(Value=false)
            -> Condition => #2
                WorkflowInput Source1
                -> WorkflowOutput
            ExternalizedMapping(Value(DisplayName=Emulate))
            -> BooleanProperty(Value=true) => #4
            -> PropertyMapping(Emulate)
            -> GroupWorkflow Poke_0_Emulator => #6
                ExternalizedMapping(Value(DisplayName=Emulate))
                -> BooleanProperty(Value=true) => #1
                ExternalizedMapping(Value(DisplayName=Filter))
                -> PropertySource<Bonsai.Windows.Input.KeyDown,System.Windows.Forms.Keys>(MemberName=Filter, Value=D0) => #3
                -> PropertyMapping(Filter) => #4
                ExternalizedMapping(SuppressRepetitions) => #5
                #4, #5 -> Bonsai.Windows.Input.KeyDown(Filter=D0, SuppressRepetitions=true)
                -> BooleanProperty(Value=false) => #7
                #3 -> PropertyMapping(Filter)
                -> Bonsai.Windows.Input.KeyUp(Filter=D0)
                -> BooleanProperty(Value=true) => #10
                #10, #7 -> Merge => #11
                #11, #1 -> SubscribeWhen
                -> WorkflowOutput
            #4 -> PropertyMapping(Emulate)
            -> GroupWorkflow Poke_1_Emulator => #8
                ExternalizedMapping(Value(DisplayName=Emulate))
                -> BooleanProperty(Value=true) => #1
                ExternalizedMapping(Value(DisplayName=Filter))
                -> PropertySource<Bonsai.Windows.Input.KeyDown,System.Windows.Forms.Keys>(MemberName=Filter, Value=D1) => #3
                -> PropertyMapping(Filter) => #4
                ExternalizedMapping(SuppressRepetitions) => #5
                #4, #5 -> Bonsai.Windows.Input.KeyDown(Filter=D1, SuppressRepetitions=true)
                -> BooleanProperty(Value=false) => #7
                #3 -> PropertyMapping(Filter)
                -> Bonsai.Windows.Input.KeyUp(Filter=D1)
                -> BooleanProperty(Value=true) => #10
                #10, #7 -> Merge => #11
                #11, #1 -> SubscribeWhen
                -> WorkflowOutput
            #4 -> PropertyMapping(Emulate)
            -> GroupWorkflow Poke_2_Emulator => #10
                ExternalizedMapping(Value(DisplayName=Emulate))
                -> BooleanProperty(Value=true) => #1
                ExternalizedMapping(Value(DisplayName=Filter))
                -> PropertySource<Bonsai.Windows.Input.KeyDown,System.Windows.Forms.Keys>(MemberName=Filter, Value=D2) => #3
                -> PropertyMapping(Filter) => #4
                ExternalizedMapping(SuppressRepetitions) => #5
                #4, #5 -> Bonsai.Windows.Input.KeyDown(Filter=D2, SuppressRepetitions=true)
                -> BooleanProperty(Value=false) => #7
                #3 -> PropertyMapping(Filter)
                -> Bonsai.Windows.Input.KeyUp(Filter=D2)
                -> BooleanProperty(Value=true) => #10
                #10, #7 -> Merge => #11
                #11, #1 -> SubscribeWhen
                -> WorkflowOutput
            WorkflowInput Source1 => #11
            ExternalizedMapping(PortName) => #12
            #11, #12 -> Bonsai.Harp.Device(PortName="NaN,", DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false)
            -> Bonsai.Shaders.DelaySubscription(DueTime=PT1S) => #14
            #14, #2 -> SubscribeWhen => #15
            -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port0) => #16
            #16, #6 -> Merge
            -> BehaviorSubject Beam0Bool
            #15 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port1) => #19
            #19, #8 -> Merge
            -> BehaviorSubject Beam1Bool
            #15 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port2) => #22
            #22, #10 -> Merge
            -> BehaviorSubject Beam2Bool
            #15 -> MemberSelector(Selector=MessageBytes)
            -> MulticastSubject BehBytes
    #0 -> Bonsai.Scripting.IronPython.PythonTransform Sound_Card
      Script:
        @returns(str)
        def process(value):
          len_output = 4
          param_spacing = 2
          param = 'Sound_Card_Port'
          start = value.find(param) + len(param) + param_spacing
          end = start + len_output
          return(value[start:end])
    -> PropertyMapping(PortName) => #39
    #35 -> PropertyMapping(Soundcard?) => #40
    #39, #40 -> GroupWorkflow HarpSoundCard
        SubscribeSubject PlaySound
        -> Skip(Count=1) => #1
        SubscribeSubject Soundcard?
        -> Condition => #3
            WorkflowInput Source1
            -> Equal(Operand=BooleanProperty(Value=true))
            -> WorkflowOutput
        SubscribeSubject SoundIndex
        -> Skip(Count=1)
        -> Timestamp
        -> MemberSelector(Selector=Timestamp) => #7
        SubscribeSubject Freq
        -> Skip(Count=1)
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            @returns(float)
            def process(value):
              return 2**value
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: uint16(it)
        -> Bonsai.Harp.Format(MessageType=Write, Address=32, PayloadType=U16) => #12
        SubscribeSubject StopSound
        -> IntProperty(Value=3)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: byte(it)
        -> Bonsai.Harp.Format(MessageType=Write, Address=33, PayloadType=U8) => #16
        SubscribeSubject Volume
        -> Skip(Count=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: uint16(it)
        -> Sink
            WorkflowInput Source1
            -> Bonsai.Harp.Format(MessageType=Write, Address=34, PayloadType=U8)
            -> WorkflowOutput
        -> Bonsai.Harp.Format(MessageType=Write, Address=35, PayloadType=U8) => #21
        #12, #16, #21 -> Merge => #22
        #1, #22 -> Merge => #23
        ExternalizedMapping(PortName) => #24
        #23, #24 -> Bonsai.Harp.Device(PortName=COM6, DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false)
        -> Bonsai.Shaders.DelaySubscription(DueTime=PT1S) => #26
        #26, #3 -> SubscribeWhen
        #23 -> Timestamp
        -> MemberSelector(Selector=Timestamp) => #29
        #29, #7 -> Zip
        -> Subtract

        IntProperty(Value=0)
        -> BehaviorSubject SoundIndex

        SubscribeSubject SoundIndex
        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U16, Payload=0)
        -> BehaviorSubject PlaySound

        ExternalizedMapping(Value(DisplayName=Soundcard?))
        -> BooleanProperty(Value=false)
        -> BehaviorSubject Soundcard?

        FloatProperty(Value=11.5)
        -> BehaviorSubject Freq

        IntProperty(Value=1000)
        -> BehaviorSubject Volume

        SubscribeSubject Freq
        -> BehaviorSubject PlayTone

        IntProperty(Value=3)
        -> BehaviorSubject StopSound
    #12 -> Bonsai.Scripting.IronPython.PythonTransform Protocol
      Script:
        param = 'Protocol'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> PropertyMapping(Exp_Name) => #43
    #43, #14 -> GroupWorkflow Control_Parameters
        ExternalizedMapping(Value(DisplayName=Data_Path))
        -> StringProperty(Value=../Data) => #1
        ExternalizedMapping(Value(DisplayName=Exp_Name))
        -> StringProperty(Value=SOUND_CAT_DISC_V2) => #3
        ExternalizedMapping(Value(DisplayName=Animal_ID))
        -> StringProperty(Value=TEST)
        -> BehaviorSubject Animal_ID => #6
        IntProperty(Value=0)
        -> Timestamp => #8
        -> MemberSelector(Selector=Timestamp.DateTime.Year) => #9
        #8 -> MemberSelector(Selector=Timestamp.DateTime.Month) => #10
        #8 -> MemberSelector(Selector=Timestamp.Date.Day) => #11
        #9, #10, #11 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1.toString() + "_" + Item2.toString() + "_" + Item3.toString() as date
            )
        -> MemberSelector(Selector=date) => #14
        #1, #3, #6, #14 -> Zip => #15
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Trial_Summary.csv" as Trial_Summary_File_Name
            )
        -> MemberSelector(Selector=Trial_Summary_File_Name)
        -> BehaviorSubject Trial_File_Name => #18
        #15 -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Detected_Licks.csv" as Licks_File_Name
            )
        -> MemberSelector(Selector=Licks_File_Name)
        -> BehaviorSubject Licks_File_Name => #21
        #15 -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Video_data.avi" as Video_File_Name
            )
        -> MemberSelector(Selector=Video_File_Name)
        -> BehaviorSubject Video_File_Name => #24
        #15 -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Video_timestamps.txt" as Video_Timestamps_File_Name
            )
        -> MemberSelector(Selector=Video_Timestamps_File_Name)
        -> BehaviorSubject Video_Timestamps_File_Name => #27
        #18, #21, #24, #27 -> Merge
        -> Bonsai.Shaders.DelaySubscription(DueTime=PT0.5S)
    #12 -> Bonsai.Scripting.IronPython.PythonTransform Stage
      Script:
        param = 'Stage'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> PropertyMapping(Stage) => #46
    #12 -> Bonsai.Scripting.IronPython.PythonTransform Stim_Type
      Script:
        param = 'Stim_Type'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> PropertyMapping(Stim_Type) => #48
    #12 -> Bonsai.Scripting.IronPython.PythonTransform Nb_Of_Stim
      Script:
        param = 'Nb_Of_Stim'
        param_type = int
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> PropertyMapping(Nb_Of_Stim) => #50
    #48, #46, #50, #23 -> GroupWorkflow Task_Params
        ExternalizedMapping(Value(DisplayName=Nb_Of_Stim))
        -> FloatProperty(Value=6)
        -> BehaviorSubject Nb_Of_Stim

        ExternalizedMapping(Value(DisplayName=Anti_Bias))
        -> BooleanProperty(Value=true)
        -> BehaviorSubject Anti_Bias

        ExternalizedMapping(Value(DisplayName=Stim_Type))
        -> StringProperty(Value=WN)
        -> BehaviorSubject Stim_Type

        ExternalizedMapping(Value(DisplayName=Stage))
        -> FloatProperty(Value=4)
        -> BehaviorSubject Stage

        ExternalizedMapping(Value(DisplayName="Stim_Dur (ms)"))
        -> FloatProperty(Value=150)
        -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds
          Expression: TimeSpan.FromMilliseconds(it)
        -> BehaviorSubject Stim_Dur

        ExternalizedMapping(Value(DisplayName="GoCueDur (ms)"))
        -> FloatProperty(Value=300)
        -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds
          Expression: TimeSpan.FromMilliseconds(it)
        -> BehaviorSubject GoCueDur

        SubscribeSubject Stim_Type => #20
        -> Condition => #21
            WorkflowInput Source1
            -> Equal(Operand=StringProperty(Value=PT))
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=PT_Boundary)) => #22
        #21, #22 -> FloatProperty(Value=8) => #23
        #20 -> Condition => #24
            WorkflowInput Source1
            -> Equal(Operand=StringProperty(Value=WN))
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=WN_Boundary)) => #25
        #24, #25 -> FloatProperty(Value=66) => #26
        #23, #26 -> Merge
        -> BehaviorSubject Boundary

        ExternalizedMapping(Value(DisplayName="ResponseWindow (s)"))
        -> FloatProperty(Value=3)
        -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromSeconds
          Expression: TimeSpan.FromSeconds(it)
        -> BehaviorSubject ResponseWindow

        ExternalizedMapping(Value(DisplayName="ITI (s)"))
        -> FloatProperty(Value=2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromSeconds
          Expression: TimeSpan.FromSeconds(it)
        -> BehaviorSubject ITI

        ExternalizedMapping(Value(DisplayName="TimeoutDuration (s)"))
        -> FloatProperty(Value=3)
        -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromSeconds
          Expression: TimeSpan.FromSeconds(it)
        -> BehaviorSubject TimeoutDuration

        Bonsai.IO.CsvReader(FileName=..\Params\Rig_Params.csv, SkipRows=0) => #41
        -> Bonsai.Scripting.IronPython.PythonTransform Y_Intercept
          Script:
            param = 'Speaker_Y_Intercept'
            param_type = float
            @returns(param_type)
            def process(value):
              param_start = value.find(param + ": ") + len(param + ": ")
              param_end = value.find(",", param_start)
              return(param_type(value[param_start:param_end]))
        -> BehaviorSubject Speaker_Y_Incercept
        #41 -> Bonsai.Scripting.IronPython.PythonTransform Slope
          Script:
            param = 'Speaker_Slope'
            param_type = float
            @returns(param_type)
            def process(value):
              param_start = value.find(param + ": ") + len(param + ": ")
              param_end = value.find(",", param_start)
              return(param_type(value[param_start:param_end]))
        -> BehaviorSubject Speaker_Slope

        ExternalizedMapping(Value(DisplayName=Visualizer_Window_Size))
        -> IntProperty(Value=30)
        -> BehaviorSubject Visualizer_Window_Size

GroupWorkflow CameraStreaming
    Bonsai.Osc.CreateTcpServer(Name=Emitter, Port=1234, NoDelay=false, AllowNatTraversal=false)

    SubscribeSubject Video_File_Name
    -> PropertyMapping(FileName) => #2
    Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
    -> DelaySubscription(DueTime=PT1S)
    -> Retry => #5
    #5, #2 -> Bonsai.Vision.VideoWriter => #6
      FileName=../Data/TEST/SOUND_CAT_DISC_V2_TEST_2023_3_23/Video_data.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=true
      FourCC=FMP4
      FrameRate=60
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    #5 -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #8
    SubscribeSubject Video_Timestamps_File_Name
    -> PropertyMapping(FileName) => #10
    #8, #10 -> Bonsai.IO.TextWriter(FileName=../Data/TEST/SOUND_CAT_DISC_V2_TEST_2023_3_23/Video_timestamps.txt, Suffix=Timestamp, Buffered=true, Overwrite=false, Append=false)
    #5 -> Bonsai.Dsp.ConvertToArray(Depth=nil)
    -> Bonsai.Osc.SendMessage(Connection=Emitter, Address=/tcpimage)
    SubscribeSubject Exp_End
    -> Condition => #15
        WorkflowInput Source1
        -> WorkflowOutput
    #6, #15 -> TakeUntil
    -> WorkflowOutput

GroupWorkflow Render_Loop
    Bonsai.Shaders.CreateWindow
      Width=1
      Height=1
      VSync=On
      SwapSync=false
      ClearColor=Black
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Minimized
      DisplayDevice=Primary
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false

    Bonsai.Shaders.Timer(DueTime=PT0S)

GroupWorkflow UDP_Client
    Bonsai.Osc.CreateUdpClient(Name=End_Signal, Port=1334, RemoteHostName="", RemotePort=0)

    Bonsai.Osc.ReceiveMessage(Address=/GUI, TypeTag=s, Connection=End_Signal)
    -> Equal(Operand=StringProperty(Value=End_Protocol))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true)
    -> MulticastSubject Exp_End

GroupWorkflow Task_Variables
    BooleanProperty(Value=false)
    -> BehaviorSubject Correct

    IntProperty(Value=0)
    -> PublishSubject TrialOutcome

    IntProperty(Value=0)
    -> BehaviorSubject FirstLick

    BooleanProperty(Value=false)
    -> BehaviorSubject TrialEnd

    FloatProperty(Value=0)
    -> BehaviorSubject Tone

    StringProperty(Value=QP04)
    -> BehaviorSubject MouseID

    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    IntProperty(Value=0)
    -> BehaviorSubject "RewSide "

    IntProperty(Value=0)
    -> BehaviorSubject DelayedReward

    IntProperty(Value=0)
    -> BehaviorSubject Reward

    BooleanProperty(Value=false)
    -> BehaviorSubject AbortTrial

    IntProperty(Value=0)
    -> BehaviorSubject Attempts

    IntProperty(Value=0)
    -> BehaviorSubject CorrectCount

    IntProperty(Value=0)
    -> BehaviorSubject RewardCount

    DoubleProperty(Value=0)
    -> BehaviorSubject Percent_Right_Licks

    IntProperty(Value=0)
    -> BehaviorSubject Time

    IntProperty(Value=0)
    -> BehaviorSubject "Response_Latency (ms)"

    IntProperty(Value=3)
    -> BehaviorSubject StimID

    FloatProperty(Value=0)
    -> BehaviorSubject WN_Amp

    DoubleProperty(Value=0)
    -> BehaviorSubject Percent_Correct

    IntProperty(Value=0)
    -> BehaviorSubject Correct_Side

    IntProperty(Value=0)
    -> BehaviorSubject Correct_Side_Count

    BooleanProperty(Value=false)
    -> BehaviorSubject Exp_End

SubscribeSubject ITI
-> PropertyMapping(DueTime)
-> Timer(DueTime=PT2S, Period=PT0S)
-> SelectMany PrepTrial
    WorkflowInput Source1
    -> Sink SetSpouts
        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject Beam1Bool

        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject Beam2Bool

        Disable SubscribeSubject Beam0Bool
        -> Disable Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> Disable BooleanProperty(Value=true)
        -> Disable MulticastSubject Beam0Bool
    -> Sink CheckValvesClosed
        WorkflowInput Source1 => #0
        -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve)
        -> MulticastSubject BehModule => #2
        #0 -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve)
        -> MulticastSubject BehModule => #4
        #2, #4 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> Sink "TrialEnd = False"
        WorkflowInput Source1
        -> BooleanProperty(Value=false)
        -> MulticastSubject TrialEnd
        -> WorkflowOutput
    -> Sink "Exp_End = False"
        WorkflowInput Source1
        -> BooleanProperty(Value=false)
        -> MulticastSubject Exp_End
        -> WorkflowOutput
    -> WorkflowOutput
-> SelectMany Trial
    SubscribeSubject Stage => #0
    -> Condition Stage_4
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=4))
        -> WorkflowOutput
    -> SelectMany Full_Task => #2
        WorkflowInput Source1
        -> SelectMany Stim
            SubscribeSubject Anti_Bias => #0
            -> Condition Off
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> SelectMany Random_Stim => #2
                SubscribeSubject Nb_Of_Stim
                -> PropertyMapping(Upper)
                -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=8)
                -> Bonsai.Numerics.Distributions.Sample
                -> Take(Count=1) => #4
                -> Condition PT
                    SubscribeSubject Stim_Type => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=PT))
                    -> WorkflowOutput
                -> GroupWorkflow Play_PT => #6
                    WorkflowInput Source1 => #0
                    -> Condition
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=1))
                        -> WorkflowOutput
                    -> SelectMany 0 => #2
                        SubscribeSubject Stim_Dur
                        -> PropertyMapping(DueTime) => #1
                        ExternalizedMapping(Value(DisplayName=Octave))
                        -> FloatProperty(Value=0) => #3
                        -> Bonsai.Scripting.IronPython.PythonTransform
                          Script:
                            @returns(float)
                            def process(value):
                              import math
                              reference_freq = 4000
                              return math.log((2**value) * reference_freq)/math.log(2)
                        -> Sink SetLevel
                            WorkflowInput Source1
                            -> IntProperty(Value=90)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: (it-107.54)/-0.0764
                            -> PropertyMapping(Value)
                            -> IntProperty(Value=229)
                            -> Sink Left
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> Sink Right
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> WorkflowOutput
                        -> MulticastSubject Freq => #6
                        #6, #1 -> Delay(DueTime=PT0.3S)
                        -> IntProperty(Value=3)
                        -> MulticastSubject StopSound
                        -> Take(Count=1)
                        -> WorkflowOutput
                        #3 -> Bonsai.Scripting.IronPython.PythonTransform
                          Script:
                            @returns(float)
                            def process(value):
                              import math
                              reference_freq = 4000
                              result =  (2**value  * reference_freq) / 1000 # get freq in kHz
                              return round(result, 1)
                        -> MulticastSubject Tone
                    #0 -> Condition
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=5))
                        -> WorkflowOutput
                    -> SelectMany 0.5 => #4
                        ExternalizedMapping(Value(DisplayName=Octave))
                        -> FloatProperty(Value=0.5) => #1
                        -> Bonsai.Scripting.IronPython.PythonTransform
                          Script:
                            @returns(float)
                            def process(value):
                              import math
                              reference_freq = 4000
                              return math.log((2**value) * reference_freq)/math.log(2)
                        -> Sink SetLevel
                            WorkflowInput Source1
                            -> IntProperty(Value=90)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: (it-107.54)/-0.0764
                            -> PropertyMapping(Value)
                            -> IntProperty(Value=229)
                            -> Sink Left
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> Sink Right
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> WorkflowOutput
                        -> MulticastSubject Freq => #4
                        SubscribeSubject Stim_Dur
                        -> PropertyMapping(DueTime) => #6
                        #4, #6 -> Delay(DueTime=PT0.3S)
                        -> IntProperty(Value=3)
                        -> MulticastSubject StopSound
                        -> Take(Count=1)
                        -> WorkflowOutput
                        #1 -> Bonsai.Scripting.IronPython.PythonTransform
                          Script:
                            @returns(float)
                            def process(value):
                              import math
                              reference_freq = 4000
                              result =  (2**value  * reference_freq) / 1000 # get freq in kHz
                              return round(result, 1)
                        -> MulticastSubject Tone
                    #0 -> Condition
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=3))
                        -> WorkflowOutput
                    -> SelectMany 0.25 => #6
                        SubscribeSubject Stim_Dur
                        -> PropertyMapping(DueTime) => #1
                        ExternalizedMapping(Value(DisplayName=Octave))
                        -> FloatProperty(Value=0.25) => #3
                        -> Bonsai.Scripting.IronPython.PythonTransform
                          Script:
                            @returns(float)
                            def process(value):
                              import math
                              reference_freq = 4000
                              return math.log((2**value) * reference_freq)/math.log(2)
                        -> Sink SetLevel
                            WorkflowInput Source1
                            -> IntProperty(Value=90)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: (it-107.54)/-0.0764
                            -> PropertyMapping(Value)
                            -> IntProperty(Value=229)
                            -> Sink Left
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> Sink Right
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> WorkflowOutput
                        -> MulticastSubject Freq => #6
                        #6, #1 -> Delay(DueTime=PT0.3S)
                        -> IntProperty(Value=3)
                        -> MulticastSubject StopSound
                        -> Take(Count=1)
                        -> WorkflowOutput
                        #3 -> Bonsai.Scripting.IronPython.PythonTransform
                          Script:
                            @returns(float)
                            def process(value):
                              import math
                              reference_freq = 4000
                              result =  (2**value  * reference_freq) / 1000 # get freq in kHz
                              return round(result, 1)
                        -> MulticastSubject Tone
                    #0 -> Condition
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=7))
                        -> WorkflowOutput
                    -> SelectMany 0.75 => #8
                        ExternalizedMapping(Value(DisplayName=Octave))
                        -> FloatProperty(Value=0.75) => #1
                        -> Bonsai.Scripting.IronPython.PythonTransform
                          Script:
                            @returns(float)
                            def process(value):
                              import math
                              reference_freq = 4000
                              return math.log((2**value) * reference_freq)/math.log(2)
                        -> Sink SetLevel
                            WorkflowInput Source1
                            -> IntProperty(Value=90)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: (it-107.54)/-0.0764
                            -> PropertyMapping(Value)
                            -> IntProperty(Value=229)
                            -> Sink Left
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> Sink Right
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> WorkflowOutput
                        -> MulticastSubject Freq => #4
                        SubscribeSubject Stim_Dur
                        -> PropertyMapping(DueTime) => #6
                        #4, #6 -> Delay(DueTime=PT0.3S)
                        -> IntProperty(Value=3)
                        -> MulticastSubject StopSound
                        -> Take(Count=1)
                        -> WorkflowOutput
                        #1 -> Bonsai.Scripting.IronPython.PythonTransform
                          Script:
                            @returns(float)
                            def process(value):
                              import math
                              reference_freq = 4000
                              result =  (2**value  * reference_freq) / 1000 # get freq in kHz
                              return round(result, 1)
                        -> MulticastSubject Tone
                    #0 -> Condition
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=6))
                        -> WorkflowOutput
                    -> SelectMany 1.5 => #10
                        SubscribeSubject Stim_Dur
                        -> PropertyMapping(DueTime) => #1
                        ExternalizedMapping(Value(DisplayName=Octave))
                        -> FloatProperty(Value=1.5) => #3
                        -> Bonsai.Scripting.IronPython.PythonTransform
                          Script:
                            @returns(float)
                            def process(value):
                              import math
                              reference_freq = 4000
                              return math.log((2**value) * reference_freq)/math.log(2)
                        -> Sink SetLevel
                            WorkflowInput Source1
                            -> IntProperty(Value=90)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: (it-107.54)/-0.0764
                            -> PropertyMapping(Value)
                            -> IntProperty(Value=229)
                            -> Sink Left
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> Sink Right
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> WorkflowOutput
                        -> MulticastSubject Freq => #6
                        #6, #1 -> Delay(DueTime=PT0.3S)
                        -> IntProperty(Value=3)
                        -> MulticastSubject StopSound
                        -> Take(Count=1)
                        -> WorkflowOutput
                        #3 -> Bonsai.Scripting.IronPython.PythonTransform
                          Script:
                            @returns(float)
                            def process(value):
                              import math
                              reference_freq = 4000
                              result =  (2**value  * reference_freq) / 1000 # get freq in kHz
                              return round(result, 1)
                        -> MulticastSubject Tone
                    #0 -> Condition
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=4))
                        -> WorkflowOutput
                    -> SelectMany 1.75 => #12
                        SubscribeSubject Stim_Dur
                        -> PropertyMapping(DueTime) => #1
                        ExternalizedMapping(Value(DisplayName=Octave))
                        -> FloatProperty(Value=1.75) => #3
                        -> Bonsai.Scripting.IronPython.PythonTransform
                          Script:
                            @returns(float)
                            def process(value):
                              import math
                              reference_freq = 4000
                              return math.log((2**value) * reference_freq)/math.log(2)
                        -> Sink SetLevel
                            WorkflowInput Source1
                            -> IntProperty(Value=90)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: (it-107.54)/-0.0764
                            -> PropertyMapping(Value)
                            -> IntProperty(Value=229)
                            -> Sink Left
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> Sink Right
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> WorkflowOutput
                        -> MulticastSubject Freq => #6
                        #6, #1 -> Delay(DueTime=PT0.3S)
                        -> IntProperty(Value=3)
                        -> MulticastSubject StopSound
                        -> Take(Count=1)
                        -> WorkflowOutput
                        #3 -> Bonsai.Scripting.IronPython.PythonTransform
                          Script:
                            @returns(float)
                            def process(value):
                              import math
                              reference_freq = 4000
                              result =  (2**value  * reference_freq) / 1000 # get freq in kHz
                              return round(result, 1)
                        -> MulticastSubject Tone
                    #0 -> Condition
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=2))
                        -> WorkflowOutput
                    -> SelectMany 2 => #14
                        SubscribeSubject Stim_Dur
                        -> PropertyMapping(DueTime) => #1
                        ExternalizedMapping(Value(DisplayName=Octave))
                        -> FloatProperty(Value=2) => #3
                        -> Bonsai.Scripting.IronPython.PythonTransform
                          Script:
                            @returns(float)
                            def process(value):
                              import math
                              reference_freq = 4000
                              return math.log((2**value) * reference_freq)/math.log(2)
                        -> Sink SetLevel
                            WorkflowInput Source1
                            -> IntProperty(Value=90)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: (it-107.54)/-0.0764
                            -> PropertyMapping(Value)
                            -> IntProperty(Value=229)
                            -> Sink Left
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> Sink Right
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> WorkflowOutput
                        -> MulticastSubject Freq => #6
                        #6, #1 -> Delay(DueTime=PT0.3S)
                        -> IntProperty(Value=3)
                        -> MulticastSubject StopSound
                        -> Take(Count=1)
                        -> WorkflowOutput
                        #3 -> Bonsai.Scripting.IronPython.PythonTransform
                          Script:
                            @returns(float)
                            def process(value):
                              import math
                              reference_freq = 4000
                              result =  (2**value  * reference_freq) / 1000 # get freq in kHz
                              return round(result, 1)
                        -> MulticastSubject Tone
                    #0 -> Condition
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=8))
                        -> WorkflowOutput
                    -> SelectMany 1.25 => #16
                        SubscribeSubject Stim_Dur
                        -> PropertyMapping(DueTime) => #1
                        ExternalizedMapping(Value(DisplayName=Octave))
                        -> FloatProperty(Value=1.25) => #3
                        -> Bonsai.Scripting.IronPython.PythonTransform
                          Script:
                            @returns(float)
                            def process(value):
                              import math
                              reference_freq = 4000
                              return math.log((2**value) * reference_freq)/math.log(2)
                        -> Sink SetLevel
                            WorkflowInput Source1
                            -> IntProperty(Value=90)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: (it-107.54)/-0.0764
                            -> PropertyMapping(Value)
                            -> IntProperty(Value=229)
                            -> Sink Left
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> Sink Right
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> WorkflowOutput
                        -> MulticastSubject Freq => #6
                        #6, #1 -> Delay(DueTime=PT0.3S)
                        -> IntProperty(Value=3)
                        -> MulticastSubject StopSound
                        -> Take(Count=1)
                        -> WorkflowOutput
                        #3 -> Bonsai.Scripting.IronPython.PythonTransform
                          Script:
                            @returns(float)
                            def process(value):
                              import math
                              reference_freq = 4000
                              result =  (2**value  * reference_freq) / 1000 # get freq in kHz
                              return round(result, 1)
                        -> MulticastSubject Tone
                    #2, #6, #4, #8, #16, #10, #12, #14 -> Merge
                    -> WorkflowOutput
                #4 -> Condition WN
                    SubscribeSubject Stim_Type => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=WN))
                    -> WorkflowOutput
                -> GroupWorkflow Play_WN => #8
                    WorkflowInput Source1 => #0
                    -> Condition
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=1))
                        -> WorkflowOutput
                    -> SelectMany 50 => #2
                        SubscribeSubject StimID
                        -> PropertyMapping(Value) => #1
                        WorkflowInput Source1 => #2
                        ExternalizedMapping(Value(DisplayName=Low_Amp))
                        -> IntProperty(Value=50)
                        -> MulticastSubject WN_Amp
                        -> GroupWorkflow Convert_To_Bonsai_Amp
                            SubscribeSubject Speaker_Y_Incercept => #0
                            SubscribeSubject Speaker_Slope
                            -> PropertyMapping(Value) => #2
                            WorkflowInput Source1 => #3
                            #3, #0 -> Zip
                            -> Subtract => #5
                            #5, #2 -> Divide(Operand=DoubleProperty(Value=1.3840476180425894))
                            -> WorkflowOutput
                        -> PropertyMapping(SoundLevel) => #7
                        #2, #7 -> Sink SetLevel => #8
                            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                            WorkflowInput Source1 => #1
                            #1, #0 -> IntProperty(Value=60)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: (it-107.54)/-0.0764
                            -> PropertyMapping(Value)
                            -> IntProperty(Value=622)
                            -> Sink Left
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> Sink Right
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> WorkflowOutput
                        #8, #1 -> IntProperty(Value=3)
                        -> MulticastSubject SoundIndex => #10
                        SubscribeSubject Stim_Dur
                        -> PropertyMapping(DueTime) => #12
                        #10, #12 -> Delay(DueTime=PT0.3S)
                        -> IntProperty(Value=30)
                        -> MulticastSubject SoundIndex
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Condition
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=3))
                        -> WorkflowOutput
                    -> SelectMany 54 => #4
                        SubscribeSubject StimID
                        -> PropertyMapping(Value) => #1
                        WorkflowInput Source1 => #2
                        ExternalizedMapping(Value(DisplayName=Low_Amp))
                        -> IntProperty(Value=54)
                        -> MulticastSubject WN_Amp
                        -> GroupWorkflow Convert_To_Bonsai_Amp
                            SubscribeSubject Speaker_Y_Incercept => #0
                            SubscribeSubject Speaker_Slope
                            -> PropertyMapping(Value) => #2
                            WorkflowInput Source1 => #3
                            #3, #0 -> Zip
                            -> Subtract => #5
                            #5, #2 -> Divide(Operand=DoubleProperty(Value=1.3840476180425894))
                            -> WorkflowOutput
                        -> PropertyMapping(SoundLevel) => #7
                        #2, #7 -> Sink SetLevel => #8
                            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                            WorkflowInput Source1 => #1
                            #1, #0 -> IntProperty(Value=63)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: (it-107.54)/-0.0764
                            -> PropertyMapping(Value)
                            -> IntProperty(Value=582)
                            -> Sink Left
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> Sink Right
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> WorkflowOutput
                        #8, #1 -> IntProperty(Value=3)
                        -> MulticastSubject SoundIndex => #10
                        SubscribeSubject Stim_Dur
                        -> PropertyMapping(DueTime) => #12
                        #10, #12 -> Delay(DueTime=PT0.3S)
                        -> IntProperty(Value=30)
                        -> MulticastSubject SoundIndex
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Condition
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=5))
                        -> WorkflowOutput
                    -> SelectMany 58 => #6
                        SubscribeSubject StimID
                        -> PropertyMapping(Value) => #1
                        WorkflowInput Source1 => #2
                        ExternalizedMapping(Value(DisplayName=Low_Amp))
                        -> IntProperty(Value=58)
                        -> MulticastSubject WN_Amp
                        -> GroupWorkflow Convert_To_Bonsai_Amp
                            SubscribeSubject Speaker_Y_Incercept => #0
                            SubscribeSubject Speaker_Slope
                            -> PropertyMapping(Value) => #2
                            WorkflowInput Source1 => #3
                            #3, #0 -> Zip
                            -> Subtract => #5
                            #5, #2 -> Divide(Operand=DoubleProperty(Value=1.3840476180425894))
                            -> WorkflowOutput
                        -> PropertyMapping(SoundLevel) => #7
                        #2, #7 -> Sink SetLevel => #8
                            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                            WorkflowInput Source1 => #1
                            #1, #0 -> IntProperty(Value=65)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: (it-107.54)/-0.0764
                            -> PropertyMapping(Value)
                            -> IntProperty(Value=556)
                            -> Sink Left
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> Sink Right
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> WorkflowOutput
                        #8, #1 -> IntProperty(Value=3)
                        -> MulticastSubject SoundIndex => #10
                        SubscribeSubject Stim_Dur
                        -> PropertyMapping(DueTime) => #12
                        #10, #12 -> Delay(DueTime=PT0.3S)
                        -> IntProperty(Value=30)
                        -> MulticastSubject SoundIndex
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Condition
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=7))
                        -> WorkflowOutput
                    -> SelectMany 62 => #8
                        SubscribeSubject StimID
                        -> PropertyMapping(Value) => #1
                        SubscribeSubject Stim_Dur
                        -> PropertyMapping(DueTime) => #3
                        WorkflowInput Source1 => #4
                        ExternalizedMapping(Value(DisplayName=Low_Amp))
                        -> IntProperty(Value=62)
                        -> MulticastSubject WN_Amp
                        -> GroupWorkflow Convert_To_Bonsai_Amp
                            SubscribeSubject Speaker_Y_Incercept => #0
                            SubscribeSubject Speaker_Slope
                            -> PropertyMapping(Value) => #2
                            WorkflowInput Source1 => #3
                            #3, #0 -> Zip
                            -> Subtract => #5
                            #5, #2 -> Divide(Operand=DoubleProperty(Value=1.3840476180425894))
                            -> WorkflowOutput
                        -> PropertyMapping(SoundLevel) => #9
                        #4, #9 -> Sink SetLevel => #10
                            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                            WorkflowInput Source1 => #1
                            #1, #0 -> IntProperty(Value=68)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: (it-107.54)/-0.0764
                            -> PropertyMapping(Value)
                            -> IntProperty(Value=517)
                            -> Sink Left
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> Sink Right
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> WorkflowOutput
                        #10, #1 -> IntProperty(Value=3)
                        -> MulticastSubject SoundIndex => #12
                        #12, #3 -> Delay(DueTime=PT0.3S)
                        -> IntProperty(Value=30)
                        -> MulticastSubject SoundIndex
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Condition
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=8))
                        -> WorkflowOutput
                    -> SelectMany 70 => #10
                        SubscribeSubject StimID
                        -> PropertyMapping(Value) => #1
                        SubscribeSubject Stim_Dur
                        -> PropertyMapping(DueTime) => #3
                        WorkflowInput Source1 => #4
                        ExternalizedMapping(Value(DisplayName=Low_Amp))
                        -> IntProperty(Value=70)
                        -> MulticastSubject WN_Amp
                        -> GroupWorkflow Convert_To_Bonsai_Amp
                            SubscribeSubject Speaker_Y_Incercept => #0
                            SubscribeSubject Speaker_Slope
                            -> PropertyMapping(Value) => #2
                            WorkflowInput Source1 => #3
                            #3, #0 -> Zip
                            -> Subtract => #5
                            #5, #2 -> Divide(Operand=DoubleProperty(Value=1.3840476180425894))
                            -> WorkflowOutput
                        -> PropertyMapping(SoundLevel) => #9
                        #4, #9 -> Sink SetLevel => #10
                            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                            WorkflowInput Source1 => #1
                            #1, #0 -> IntProperty(Value=74)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: (it-107.54)/-0.0764
                            -> PropertyMapping(Value)
                            -> IntProperty(Value=439)
                            -> Sink Left
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> Sink Right
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> WorkflowOutput
                        #10, #1 -> IntProperty(Value=3)
                        -> MulticastSubject SoundIndex => #12
                        #12, #3 -> Delay(DueTime=PT0.3S)
                        -> IntProperty(Value=30)
                        -> MulticastSubject SoundIndex
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Condition
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=6))
                        -> WorkflowOutput
                    -> SelectMany 74 => #12
                        SubscribeSubject StimID
                        -> PropertyMapping(Value) => #1
                        SubscribeSubject Stim_Dur
                        -> PropertyMapping(DueTime) => #3
                        WorkflowInput Source1 => #4
                        ExternalizedMapping(Value(DisplayName=Low_Amp))
                        -> IntProperty(Value=74)
                        -> MulticastSubject WN_Amp
                        -> GroupWorkflow Convert_To_Bonsai_Amp
                            SubscribeSubject Speaker_Y_Incercept => #0
                            SubscribeSubject Speaker_Slope
                            -> PropertyMapping(Value) => #2
                            WorkflowInput Source1 => #3
                            #3, #0 -> Zip
                            -> Subtract => #5
                            #5, #2 -> Divide(Operand=DoubleProperty(Value=1.3840476180425894))
                            -> WorkflowOutput
                        -> PropertyMapping(SoundLevel) => #9
                        #4, #9 -> Sink SetLevel => #10
                            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                            WorkflowInput Source1 => #1
                            #1, #0 -> IntProperty(Value=77)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: (it-107.54)/-0.0764
                            -> PropertyMapping(Value)
                            -> IntProperty(Value=399)
                            -> Sink Left
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> Sink Right
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> WorkflowOutput
                        #10, #1 -> IntProperty(Value=3)
                        -> MulticastSubject SoundIndex => #12
                        #12, #3 -> Delay(DueTime=PT0.3S)
                        -> IntProperty(Value=30)
                        -> MulticastSubject SoundIndex
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Condition
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=4))
                        -> WorkflowOutput
                    -> SelectMany 78 => #14
                        SubscribeSubject StimID
                        -> PropertyMapping(Value) => #1
                        SubscribeSubject Stim_Dur
                        -> PropertyMapping(DueTime) => #3
                        WorkflowInput Source1 => #4
                        ExternalizedMapping(Value(DisplayName=Low_Amp))
                        -> IntProperty(Value=78)
                        -> MulticastSubject WN_Amp
                        -> GroupWorkflow Convert_To_Bonsai_Amp
                            SubscribeSubject Speaker_Y_Incercept => #0
                            SubscribeSubject Speaker_Slope
                            -> PropertyMapping(Value) => #2
                            WorkflowInput Source1 => #3
                            #3, #0 -> Zip
                            -> Subtract => #5
                            #5, #2 -> Divide(Operand=DoubleProperty(Value=1.3840476180425894))
                            -> WorkflowOutput
                        -> PropertyMapping(SoundLevel) => #9
                        #4, #9 -> Sink SetLevel => #10
                            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                            WorkflowInput Source1 => #1
                            #1, #0 -> IntProperty(Value=80)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: (it-107.54)/-0.0764
                            -> PropertyMapping(Value)
                            -> IntProperty(Value=360)
                            -> Sink Left
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> Sink Right
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> WorkflowOutput
                        #10, #1 -> IntProperty(Value=3)
                        -> MulticastSubject SoundIndex => #12
                        #12, #3 -> Delay(DueTime=PT0.3S)
                        -> IntProperty(Value=30)
                        -> MulticastSubject SoundIndex
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Condition
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=2))
                        -> WorkflowOutput
                    -> SelectMany 82 => #16
                        SubscribeSubject StimID
                        -> PropertyMapping(Value) => #1
                        SubscribeSubject Stim_Dur
                        -> PropertyMapping(DueTime) => #3
                        WorkflowInput Source1 => #4
                        ExternalizedMapping(Value(DisplayName=Low_Amp))
                        -> IntProperty(Value=82)
                        -> MulticastSubject WN_Amp
                        -> GroupWorkflow Convert_To_Bonsai_Amp
                            SubscribeSubject Speaker_Y_Incercept => #0
                            SubscribeSubject Speaker_Slope
                            -> PropertyMapping(Value) => #2
                            WorkflowInput Source1 => #3
                            #3, #0 -> Zip
                            -> Subtract => #5
                            #5, #2 -> Divide(Operand=DoubleProperty(Value=1.3840476180425894))
                            -> WorkflowOutput
                        -> PropertyMapping(SoundLevel) => #9
                        #4, #9 -> Sink SetLevel => #10
                            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                            WorkflowInput Source1 => #1
                            #1, #0 -> IntProperty(Value=83)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: (it-107.54)/-0.0764
                            -> PropertyMapping(Value)
                            -> IntProperty(Value=321)
                            -> Sink Left
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> Sink Right
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> WorkflowOutput
                        #10, #1 -> IntProperty(Value=3)
                        -> MulticastSubject SoundIndex => #12
                        #12, #3 -> Delay(DueTime=PT0.3S)
                        -> IntProperty(Value=30)
                        -> MulticastSubject SoundIndex
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #2, #4, #6, #8, #10, #12, #14, #16 -> Merge
                    -> WorkflowOutput
                #6, #8 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #0 -> Condition On
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany Anti_Bias => #4
                SubscribeSubject P_Right => #0
                Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample => #2
                #2, #0 -> Zip => #3
                -> LessThan
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany "> boundary" => #6
                    SubscribeSubject Nb_Of_Stim
                    -> Divide(Operand=IntProperty(Value=2))
                    -> PropertyMapping(Upper)
                    -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=3)
                    -> Bonsai.Numerics.Distributions.Sample
                    -> Take(Count=1) => #5
                    -> Condition PT
                        SubscribeSubject Stim_Type => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=PT))
                        -> WorkflowOutput
                    -> GroupWorkflow Play_PT => #7
                        WorkflowInput Source1 => #0
                        -> Condition 3
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=3))
                            -> WorkflowOutput
                        -> SelectMany 1.5 => #2
                            SubscribeSubject Stim_Dur
                            -> PropertyMapping(DueTime) => #1
                            ExternalizedMapping(Value(DisplayName=Octave))
                            -> FloatProperty(Value=1.5) => #3
                            -> Bonsai.Scripting.IronPython.PythonTransform
                              Script:
                                @returns(float)
                                def process(value):
                                  import math
                                  reference_freq = 4000
                                  return math.log((2**value) * reference_freq)/math.log(2)
                            -> Sink SetLevel
                                WorkflowInput Source1
                                -> IntProperty(Value=90)
                                -> Bonsai.Scripting.Expressions.ExpressionTransform
                                  Expression: (it-107.54)/-0.0764
                                -> PropertyMapping(Value)
                                -> IntProperty(Value=229)
                                -> Sink Left
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> Sink Right
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> WorkflowOutput
                            -> MulticastSubject Freq => #6
                            #6, #1 -> Delay(DueTime=PT0.3S)
                            -> IntProperty(Value=3)
                            -> MulticastSubject StopSound
                            -> Take(Count=1)
                            -> WorkflowOutput
                            #3 -> Bonsai.Scripting.IronPython.PythonTransform
                              Script:
                                @returns(float)
                                def process(value):
                                  import math
                                  reference_freq = 4000
                                  result =  (2**value  * reference_freq) / 1000 # get freq in kHz
                                  return round(result, 1)
                            -> MulticastSubject Tone
                        #0 -> Condition 2
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=2))
                            -> WorkflowOutput
                        -> SelectMany 1.75 => #4
                            SubscribeSubject Stim_Dur
                            -> PropertyMapping(DueTime) => #1
                            ExternalizedMapping(Value(DisplayName=Octave))
                            -> FloatProperty(Value=1.75) => #3
                            -> Bonsai.Scripting.IronPython.PythonTransform
                              Script:
                                @returns(float)
                                def process(value):
                                  import math
                                  reference_freq = 4000
                                  return math.log((2**value) * reference_freq)/math.log(2)
                            -> Sink SetLevel
                                WorkflowInput Source1
                                -> IntProperty(Value=90)
                                -> Bonsai.Scripting.Expressions.ExpressionTransform
                                  Expression: (it-107.54)/-0.0764
                                -> PropertyMapping(Value)
                                -> IntProperty(Value=229)
                                -> Sink Left
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> Sink Right
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> WorkflowOutput
                            -> MulticastSubject Freq => #6
                            #6, #1 -> Delay(DueTime=PT0.3S)
                            -> IntProperty(Value=3)
                            -> MulticastSubject StopSound
                            -> Take(Count=1)
                            -> WorkflowOutput
                            #3 -> Bonsai.Scripting.IronPython.PythonTransform
                              Script:
                                @returns(float)
                                def process(value):
                                  import math
                                  reference_freq = 4000
                                  result =  (2**value  * reference_freq) / 1000 # get freq in kHz
                                  return round(result, 1)
                            -> MulticastSubject Tone
                        #0 -> Condition 1
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=1))
                            -> WorkflowOutput
                        -> SelectMany 2 => #6
                            SubscribeSubject Stim_Dur
                            -> PropertyMapping(DueTime) => #1
                            ExternalizedMapping(Value(DisplayName=Octave))
                            -> FloatProperty(Value=2) => #3
                            -> Bonsai.Scripting.IronPython.PythonTransform
                              Script:
                                @returns(float)
                                def process(value):
                                  import math
                                  reference_freq = 4000
                                  return math.log((2**value) * reference_freq)/math.log(2)
                            -> Sink SetLevel
                                WorkflowInput Source1
                                -> IntProperty(Value=90)
                                -> Bonsai.Scripting.Expressions.ExpressionTransform
                                  Expression: (it-107.54)/-0.0764
                                -> PropertyMapping(Value)
                                -> IntProperty(Value=229)
                                -> Sink Left
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> Sink Right
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> WorkflowOutput
                            -> MulticastSubject Freq => #6
                            #6, #1 -> Delay(DueTime=PT0.3S)
                            -> IntProperty(Value=3)
                            -> MulticastSubject StopSound
                            -> Take(Count=1)
                            -> WorkflowOutput
                            #3 -> Bonsai.Scripting.IronPython.PythonTransform
                              Script:
                                @returns(float)
                                def process(value):
                                  import math
                                  reference_freq = 4000
                                  result =  (2**value  * reference_freq) / 1000 # get freq in kHz
                                  return round(result, 1)
                            -> MulticastSubject Tone
                        #0 -> Condition 4
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=4))
                            -> WorkflowOutput
                        -> SelectMany 1.25 => #8
                            SubscribeSubject Stim_Dur
                            -> PropertyMapping(DueTime) => #1
                            ExternalizedMapping(Value(DisplayName=Octave))
                            -> FloatProperty(Value=1.25) => #3
                            -> Bonsai.Scripting.IronPython.PythonTransform
                              Script:
                                @returns(float)
                                def process(value):
                                  import math
                                  reference_freq = 4000
                                  return math.log((2**value) * reference_freq)/math.log(2)
                            -> Sink SetLevel
                                WorkflowInput Source1
                                -> IntProperty(Value=90)
                                -> Bonsai.Scripting.Expressions.ExpressionTransform
                                  Expression: (it-107.54)/-0.0764
                                -> PropertyMapping(Value)
                                -> IntProperty(Value=229)
                                -> Sink Left
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> Sink Right
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> WorkflowOutput
                            -> MulticastSubject Freq => #6
                            #6, #1 -> Delay(DueTime=PT0.3S)
                            -> IntProperty(Value=3)
                            -> MulticastSubject StopSound
                            -> Take(Count=1)
                            -> WorkflowOutput
                            #3 -> Bonsai.Scripting.IronPython.PythonTransform
                              Script:
                                @returns(float)
                                def process(value):
                                  import math
                                  reference_freq = 4000
                                  result =  (2**value  * reference_freq) / 1000 # get freq in kHz
                                  return round(result, 1)
                            -> MulticastSubject Tone
                        Source4=#8, Source5=#2, Source6=#4, Source7=#6 -> Merge
                        -> WorkflowOutput
                    #5 -> Condition WN
                        SubscribeSubject Stim_Type => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=WN))
                        -> WorkflowOutput
                    -> GroupWorkflow Play_WN => #9
                        WorkflowInput Source1 => #0
                        -> Condition 4
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=4))
                            -> WorkflowOutput
                        -> SelectMany 70 => #2
                            SubscribeSubject StimID
                            -> PropertyMapping(Value) => #1
                            WorkflowInput Source1 => #2
                            ExternalizedMapping(Value(DisplayName=Low_Amp))
                            -> IntProperty(Value=70)
                            -> MulticastSubject WN_Amp
                            -> GroupWorkflow Convert_To_Bonsai_Amp
                                SubscribeSubject Speaker_Y_Incercept => #0
                                SubscribeSubject Speaker_Slope
                                -> PropertyMapping(Value) => #2
                                WorkflowInput Source1 => #3
                                #3, #0 -> Zip
                                -> Subtract => #5
                                #5, #2 -> Divide(Operand=DoubleProperty(Value=1.3840476180425894))
                                -> WorkflowOutput
                            -> PropertyMapping(SoundLevel) => #7
                            #2, #7 -> Sink SetLevel => #8
                                ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                                WorkflowInput Source1 => #1
                                #1, #0 -> IntProperty(Value=60)
                                -> Bonsai.Scripting.Expressions.ExpressionTransform
                                  Expression: (it-107.54)/-0.0764
                                -> PropertyMapping(Value)
                                -> IntProperty(Value=622)
                                -> Sink Left
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> Sink Right
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> WorkflowOutput
                            #8, #1 -> IntProperty(Value=3)
                            -> MulticastSubject SoundIndex => #10
                            SubscribeSubject Stim_Dur
                            -> PropertyMapping(DueTime) => #12
                            #10, #12 -> Delay(DueTime=PT0.3S)
                            -> IntProperty(Value=30)
                            -> MulticastSubject SoundIndex
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #0 -> Condition 3
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=3))
                            -> WorkflowOutput
                        -> SelectMany 74 => #4
                            SubscribeSubject StimID
                            -> PropertyMapping(Value) => #1
                            WorkflowInput Source1 => #2
                            ExternalizedMapping(Value(DisplayName=Low_Amp))
                            -> IntProperty(Value=74)
                            -> MulticastSubject WN_Amp
                            -> GroupWorkflow Convert_To_Bonsai_Amp
                                SubscribeSubject Speaker_Y_Incercept => #0
                                SubscribeSubject Speaker_Slope
                                -> PropertyMapping(Value) => #2
                                WorkflowInput Source1 => #3
                                #3, #0 -> Zip
                                -> Subtract => #5
                                #5, #2 -> Divide(Operand=DoubleProperty(Value=1.3840476180425894))
                                -> WorkflowOutput
                            -> PropertyMapping(SoundLevel) => #7
                            #2, #7 -> Sink SetLevel => #8
                                ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                                WorkflowInput Source1 => #1
                                #1, #0 -> IntProperty(Value=77)
                                -> Bonsai.Scripting.Expressions.ExpressionTransform
                                  Expression: (it-107.54)/-0.0764
                                -> PropertyMapping(Value)
                                -> IntProperty(Value=399)
                                -> Sink Left
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> Sink Right
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> WorkflowOutput
                            #8, #1 -> IntProperty(Value=3)
                            -> MulticastSubject SoundIndex => #10
                            SubscribeSubject Stim_Dur
                            -> PropertyMapping(DueTime) => #12
                            #10, #12 -> Delay(DueTime=PT0.15S)
                            -> IntProperty(Value=30)
                            -> MulticastSubject SoundIndex
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #0 -> Condition 2
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=2))
                            -> WorkflowOutput
                        -> SelectMany 78 => #6
                            SubscribeSubject StimID
                            -> PropertyMapping(Value) => #1
                            WorkflowInput Source1 => #2
                            ExternalizedMapping(Value(DisplayName=Low_Amp))
                            -> IntProperty(Value=78)
                            -> MulticastSubject WN_Amp
                            -> GroupWorkflow Convert_To_Bonsai_Amp
                                SubscribeSubject Speaker_Y_Incercept => #0
                                SubscribeSubject Speaker_Slope
                                -> PropertyMapping(Value) => #2
                                WorkflowInput Source1 => #3
                                #3, #0 -> Zip
                                -> Subtract => #5
                                #5, #2 -> Divide(Operand=DoubleProperty(Value=1.3840476180425894))
                                -> WorkflowOutput
                            -> PropertyMapping(SoundLevel) => #7
                            #2, #7 -> Sink SetLevel => #8
                                ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                                WorkflowInput Source1 => #1
                                #1, #0 -> IntProperty(Value=80)
                                -> Bonsai.Scripting.Expressions.ExpressionTransform
                                  Expression: (it-107.54)/-0.0764
                                -> PropertyMapping(Value)
                                -> IntProperty(Value=360)
                                -> Sink Left
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> Sink Right
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> WorkflowOutput
                            #8, #1 -> IntProperty(Value=3)
                            -> MulticastSubject SoundIndex => #10
                            SubscribeSubject Stim_Dur
                            -> PropertyMapping(DueTime) => #12
                            #10, #12 -> Delay(DueTime=PT0.15S)
                            -> IntProperty(Value=30)
                            -> MulticastSubject SoundIndex
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #0 -> Condition 1
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=1))
                            -> WorkflowOutput
                        -> SelectMany 82 => #8
                            SubscribeSubject StimID
                            -> PropertyMapping(Value) => #1
                            WorkflowInput Source1 => #2
                            ExternalizedMapping(Value(DisplayName=Low_Amp))
                            -> IntProperty(Value=82)
                            -> MulticastSubject WN_Amp
                            -> GroupWorkflow Convert_To_Bonsai_Amp
                                SubscribeSubject Speaker_Y_Incercept => #0
                                SubscribeSubject Speaker_Slope
                                -> PropertyMapping(Value) => #2
                                WorkflowInput Source1 => #3
                                #3, #0 -> Zip
                                -> Subtract => #5
                                #5, #2 -> Divide(Operand=DoubleProperty(Value=1.3840476180425894))
                                -> WorkflowOutput
                            -> PropertyMapping(SoundLevel) => #7
                            #2, #7 -> Sink SetLevel => #8
                                ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                                WorkflowInput Source1 => #1
                                #1, #0 -> IntProperty(Value=60)
                                -> Bonsai.Scripting.Expressions.ExpressionTransform
                                  Expression: (it-107.54)/-0.0764
                                -> PropertyMapping(Value)
                                -> IntProperty(Value=622)
                                -> Sink Left
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> Sink Right
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> WorkflowOutput
                            #8, #1 -> IntProperty(Value=3)
                            -> MulticastSubject SoundIndex => #10
                            SubscribeSubject Stim_Dur
                            -> PropertyMapping(DueTime) => #12
                            #10, #12 -> Delay(DueTime=PT0.3S)
                            -> IntProperty(Value=30)
                            -> MulticastSubject SoundIndex
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #2, #4, #6, #8 -> Merge
                        -> WorkflowOutput
                    #7, #9 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #3 -> GreaterThanOrEqual
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany "< boundary" => #9
                    SubscribeSubject Nb_Of_Stim
                    -> Divide(Operand=IntProperty(Value=2))
                    -> PropertyMapping(Upper)
                    -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=3)
                    -> Bonsai.Numerics.Distributions.Sample
                    -> Take(Count=1) => #5
                    -> Condition PT
                        SubscribeSubject Stim_Type => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=PT))
                        -> WorkflowOutput
                    -> GroupWorkflow Play_PT => #7
                        WorkflowInput Source1 => #0
                        -> Condition 1
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=1))
                            -> WorkflowOutput
                        -> SelectMany 0 => #2
                            SubscribeSubject Stim_Dur
                            -> PropertyMapping(DueTime) => #1
                            ExternalizedMapping(Value(DisplayName=Octave))
                            -> FloatProperty(Value=0) => #3
                            -> Bonsai.Scripting.IronPython.PythonTransform
                              Script:
                                @returns(float)
                                def process(value):
                                  import math
                                  reference_freq = 4000
                                  return math.log((2**value) * reference_freq)/math.log(2)
                            -> Sink SetLevel
                                WorkflowInput Source1
                                -> IntProperty(Value=90)
                                -> Bonsai.Scripting.Expressions.ExpressionTransform
                                  Expression: (it-107.54)/-0.0764
                                -> PropertyMapping(Value)
                                -> IntProperty(Value=229)
                                -> Sink Left
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> Sink Right
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> WorkflowOutput
                            -> MulticastSubject Freq => #6
                            #6, #1 -> Delay(DueTime=PT0.3S)
                            -> IntProperty(Value=3)
                            -> MulticastSubject StopSound
                            -> Take(Count=1)
                            -> WorkflowOutput
                            #3 -> Bonsai.Scripting.IronPython.PythonTransform
                              Script:
                                @returns(float)
                                def process(value):
                                  import math
                                  reference_freq = 4000
                                  result =  (2**value  * reference_freq) / 1000 # get freq in kHz
                                  return round(result, 1)
                            -> MulticastSubject Tone
                        #0 -> Condition 3
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=3))
                            -> WorkflowOutput
                        -> SelectMany 0.5 => #4
                            ExternalizedMapping(Value(DisplayName=Octave))
                            -> FloatProperty(Value=0.5) => #1
                            -> Bonsai.Scripting.IronPython.PythonTransform
                              Script:
                                @returns(float)
                                def process(value):
                                  import math
                                  reference_freq = 4000
                                  return math.log((2**value) * reference_freq)/math.log(2)
                            -> Sink SetLevel
                                WorkflowInput Source1
                                -> IntProperty(Value=90)
                                -> Bonsai.Scripting.Expressions.ExpressionTransform
                                  Expression: (it-107.54)/-0.0764
                                -> PropertyMapping(Value)
                                -> IntProperty(Value=229)
                                -> Sink Left
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> Sink Right
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> WorkflowOutput
                            -> MulticastSubject Freq => #4
                            SubscribeSubject Stim_Dur
                            -> PropertyMapping(DueTime) => #6
                            #4, #6 -> Delay(DueTime=PT0.3S)
                            -> IntProperty(Value=3)
                            -> MulticastSubject StopSound
                            -> Take(Count=1)
                            -> WorkflowOutput
                            #1 -> Bonsai.Scripting.IronPython.PythonTransform
                              Script:
                                @returns(float)
                                def process(value):
                                  import math
                                  reference_freq = 4000
                                  result =  (2**value  * reference_freq) / 1000 # get freq in kHz
                                  return round(result, 1)
                            -> MulticastSubject Tone
                        #0 -> Condition 2
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=2))
                            -> WorkflowOutput
                        -> SelectMany 0.25 => #6
                            SubscribeSubject Stim_Dur
                            -> PropertyMapping(DueTime) => #1
                            ExternalizedMapping(Value(DisplayName=Octave))
                            -> FloatProperty(Value=0.25) => #3
                            -> Bonsai.Scripting.IronPython.PythonTransform
                              Script:
                                @returns(float)
                                def process(value):
                                  import math
                                  reference_freq = 4000
                                  return math.log((2**value) * reference_freq)/math.log(2)
                            -> Sink SetLevel
                                WorkflowInput Source1
                                -> IntProperty(Value=90)
                                -> Bonsai.Scripting.Expressions.ExpressionTransform
                                  Expression: (it-107.54)/-0.0764
                                -> PropertyMapping(Value)
                                -> IntProperty(Value=229)
                                -> Sink Left
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> Sink Right
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> WorkflowOutput
                            -> MulticastSubject Freq => #6
                            #6, #1 -> Delay(DueTime=PT0.3S)
                            -> IntProperty(Value=3)
                            -> MulticastSubject StopSound
                            -> Take(Count=1)
                            -> WorkflowOutput
                            #3 -> Bonsai.Scripting.IronPython.PythonTransform
                              Script:
                                @returns(float)
                                def process(value):
                                  import math
                                  reference_freq = 4000
                                  result =  (2**value  * reference_freq) / 1000 # get freq in kHz
                                  return round(result, 1)
                            -> MulticastSubject Tone
                        #0 -> Condition 4
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=4))
                            -> WorkflowOutput
                        -> SelectMany 0.75 => #8
                            ExternalizedMapping(Value(DisplayName=Octave))
                            -> FloatProperty(Value=0.75) => #1
                            -> Bonsai.Scripting.IronPython.PythonTransform
                              Script:
                                @returns(float)
                                def process(value):
                                  import math
                                  reference_freq = 4000
                                  return math.log((2**value) * reference_freq)/math.log(2)
                            -> Sink SetLevel
                                WorkflowInput Source1
                                -> IntProperty(Value=90)
                                -> Bonsai.Scripting.Expressions.ExpressionTransform
                                  Expression: (it-107.54)/-0.0764
                                -> PropertyMapping(Value)
                                -> IntProperty(Value=229)
                                -> Sink Left
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> Sink Right
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> WorkflowOutput
                            -> MulticastSubject Freq => #4
                            SubscribeSubject Stim_Dur
                            -> PropertyMapping(DueTime) => #6
                            #4, #6 -> Delay(DueTime=PT0.3S)
                            -> IntProperty(Value=3)
                            -> MulticastSubject StopSound
                            -> Take(Count=1)
                            -> WorkflowOutput
                            #1 -> Bonsai.Scripting.IronPython.PythonTransform
                              Script:
                                @returns(float)
                                def process(value):
                                  import math
                                  reference_freq = 4000
                                  result =  (2**value  * reference_freq) / 1000 # get freq in kHz
                                  return round(result, 1)
                            -> MulticastSubject Tone
                        #2, #6, #4, #8 -> Merge
                        -> WorkflowOutput
                    #5 -> Condition WN
                        SubscribeSubject Stim_Type => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=WN))
                        -> WorkflowOutput
                    -> GroupWorkflow Play_WN => #9
                        WorkflowInput Source1 => #0
                        -> Condition 1
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=1))
                            -> WorkflowOutput
                        -> SelectMany 50 => #2
                            SubscribeSubject StimID
                            -> PropertyMapping(Value) => #1
                            WorkflowInput Source1 => #2
                            ExternalizedMapping(Value(DisplayName=Low_Amp))
                            -> IntProperty(Value=50)
                            -> MulticastSubject WN_Amp
                            -> GroupWorkflow Convert_To_Bonsai_Amp
                                SubscribeSubject Speaker_Y_Incercept => #0
                                SubscribeSubject Speaker_Slope
                                -> PropertyMapping(Value) => #2
                                WorkflowInput Source1 => #3
                                #3, #0 -> Zip
                                -> Subtract => #5
                                #5, #2 -> Divide(Operand=DoubleProperty(Value=1.3840476180425894))
                                -> WorkflowOutput
                            -> PropertyMapping(SoundLevel) => #7
                            #2, #7 -> Sink SetLevel => #8
                                ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                                WorkflowInput Source1 => #1
                                #1, #0 -> IntProperty(Value=60)
                                -> Bonsai.Scripting.Expressions.ExpressionTransform
                                  Expression: (it-107.54)/-0.0764
                                -> PropertyMapping(Value)
                                -> IntProperty(Value=622)
                                -> Sink Left
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> Sink Right
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> WorkflowOutput
                            #8, #1 -> IntProperty(Value=3)
                            -> MulticastSubject SoundIndex => #10
                            SubscribeSubject Stim_Dur
                            -> PropertyMapping(DueTime) => #12
                            #10, #12 -> Delay(DueTime=PT0.15S)
                            -> IntProperty(Value=30)
                            -> MulticastSubject SoundIndex
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #0 -> Condition 2
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=2))
                            -> WorkflowOutput
                        -> SelectMany 54 => #4
                            SubscribeSubject StimID
                            -> PropertyMapping(Value) => #1
                            WorkflowInput Source1 => #2
                            ExternalizedMapping(Value(DisplayName=Low_Amp))
                            -> IntProperty(Value=54)
                            -> MulticastSubject WN_Amp
                            -> GroupWorkflow Convert_To_Bonsai_Amp
                                SubscribeSubject Speaker_Y_Incercept => #0
                                SubscribeSubject Speaker_Slope
                                -> PropertyMapping(Value) => #2
                                WorkflowInput Source1 => #3
                                #3, #0 -> Zip
                                -> Subtract => #5
                                #5, #2 -> Divide(Operand=DoubleProperty(Value=1.3840476180425894))
                                -> WorkflowOutput
                            -> PropertyMapping(SoundLevel) => #7
                            #2, #7 -> Sink SetLevel => #8
                                ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                                WorkflowInput Source1 => #1
                                #1, #0 -> IntProperty(Value=63)
                                -> Bonsai.Scripting.Expressions.ExpressionTransform
                                  Expression: (it-107.54)/-0.0764
                                -> PropertyMapping(Value)
                                -> IntProperty(Value=582)
                                -> Sink Left
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> Sink Right
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> WorkflowOutput
                            #8, #1 -> IntProperty(Value=3)
                            -> MulticastSubject SoundIndex => #10
                            SubscribeSubject Stim_Dur
                            -> PropertyMapping(DueTime) => #12
                            #10, #12 -> Delay(DueTime=PT0.15S)
                            -> IntProperty(Value=30)
                            -> MulticastSubject SoundIndex
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #0 -> Condition 3
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=3))
                            -> WorkflowOutput
                        -> SelectMany 58 => #6
                            SubscribeSubject StimID
                            -> PropertyMapping(Value) => #1
                            WorkflowInput Source1 => #2
                            ExternalizedMapping(Value(DisplayName=Low_Amp))
                            -> IntProperty(Value=58)
                            -> MulticastSubject WN_Amp
                            -> GroupWorkflow Convert_To_Bonsai_Amp
                                SubscribeSubject Speaker_Y_Incercept => #0
                                SubscribeSubject Speaker_Slope
                                -> PropertyMapping(Value) => #2
                                WorkflowInput Source1 => #3
                                #3, #0 -> Zip
                                -> Subtract => #5
                                #5, #2 -> Divide(Operand=DoubleProperty(Value=1.3840476180425894))
                                -> WorkflowOutput
                            -> PropertyMapping(SoundLevel) => #7
                            #2, #7 -> Sink SetLevel => #8
                                ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                                WorkflowInput Source1 => #1
                                #1, #0 -> IntProperty(Value=65)
                                -> Bonsai.Scripting.Expressions.ExpressionTransform
                                  Expression: (it-107.54)/-0.0764
                                -> PropertyMapping(Value)
                                -> IntProperty(Value=556)
                                -> Sink Left
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> Sink Right
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> WorkflowOutput
                            #8, #1 -> IntProperty(Value=3)
                            -> MulticastSubject SoundIndex => #10
                            SubscribeSubject Stim_Dur
                            -> PropertyMapping(DueTime) => #12
                            #10, #12 -> Delay(DueTime=PT0.15S)
                            -> IntProperty(Value=30)
                            -> MulticastSubject SoundIndex
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #0 -> Condition 4
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=4))
                            -> WorkflowOutput
                        -> SelectMany 62 => #8
                            SubscribeSubject StimID
                            -> PropertyMapping(Value) => #1
                            WorkflowInput Source1 => #2
                            ExternalizedMapping(Value(DisplayName=Low_Amp))
                            -> IntProperty(Value=62)
                            -> MulticastSubject WN_Amp
                            -> GroupWorkflow Convert_To_Bonsai_Amp
                                SubscribeSubject Speaker_Y_Incercept => #0
                                SubscribeSubject Speaker_Slope
                                -> PropertyMapping(Value) => #2
                                WorkflowInput Source1 => #3
                                #3, #0 -> Zip
                                -> Subtract => #5
                                #5, #2 -> Divide(Operand=DoubleProperty(Value=1.3840476180425894))
                                -> WorkflowOutput
                            -> PropertyMapping(SoundLevel) => #7
                            #2, #7 -> Sink SetLevel => #8
                                ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                                WorkflowInput Source1 => #1
                                #1, #0 -> IntProperty(Value=60)
                                -> Bonsai.Scripting.Expressions.ExpressionTransform
                                  Expression: (it-107.54)/-0.0764
                                -> PropertyMapping(Value)
                                -> IntProperty(Value=622)
                                -> Sink Left
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> Sink Right
                                    WorkflowInput Source1
                                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                    -> MulticastSubject PlaySound
                                    -> WorkflowOutput
                                -> WorkflowOutput
                            #8, #1 -> IntProperty(Value=3)
                            -> MulticastSubject SoundIndex => #10
                            SubscribeSubject Stim_Dur
                            -> PropertyMapping(DueTime) => #12
                            #10, #12 -> Delay(DueTime=PT0.3S)
                            -> IntProperty(Value=30)
                            -> MulticastSubject SoundIndex
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #2, #4, #6, #8 -> Merge
                        -> WorkflowOutput
                    #7, #9 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #6, #9 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #2, #4 -> Merge
            -> SelectMany Write_NaN
                SubscribeSubject Stim_Type => #0
                -> Condition PT
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=PT))
                    -> WorkflowOutput
                -> Bonsai.Scripting.IronPython.PythonTransform NaN
                  Script:
                    from System import Single

                    @returns(Single)
                    def process(value):
                      return (Single(float.NaN))
                -> MulticastSubject WN_Amp => #3
                #0 -> Condition WN
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=WN))
                    -> WorkflowOutput
                -> Bonsai.Scripting.IronPython.PythonTransform NaN
                  Script:
                    from System import Single

                    @returns(Single)
                    def process(value):
                      return (Single(float.NaN))
                -> MulticastSubject Tone => #6
                #3, #6 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany GoCue => #2
            WorkflowInput Source1 => #0
            SubscribeSubject GoCueDur
            -> PropertyMapping(DueTime) => #2
            #0, #2 -> Delay(DueTime=PT0.3S)
            -> WorkflowOutput
        -> SelectMany Response => #3
            SubscribeSubject Beam1Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> IntProperty(Value=1) => #2
            SubscribeSubject Beam2Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> IntProperty(Value=2) => #5
            #2, #5 -> Merge
            -> Take(Count=1)
            -> Sink ResetSpouts
                SubscribeSubject Beam1Bool
                -> Condition
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> BooleanProperty(Value=true)
                -> MulticastSubject Beam1Bool

                SubscribeSubject Beam2Bool
                -> Condition
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> BooleanProperty(Value=true)
                -> MulticastSubject Beam2Bool
            -> Sink RecordFirstLick
                WorkflowInput Source1
                -> MulticastSubject FirstLick
                -> WorkflowOutput
            -> Take(Count=1) => #10
            -> Equal(Operand=IntProperty(Value=1)) => #11
            Disable SubscribeSubject CorrectCount => #12
            SubscribeSubject Boundary => #13
            -> PropertyMapping(Value) => #14
            SubscribeSubject Stim_Type => #15
            -> Condition PT
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=StringProperty(Value=PT))
                -> WorkflowOutput
            -> SelectMany => #17
                SubscribeSubject Tone
                -> WorkflowOutput
            #15 -> Condition WN
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=StringProperty(Value=WN))
                -> WorkflowOutput
            -> SelectMany => #19
                SubscribeSubject WN_Amp
                -> WorkflowOutput
            #17, #19 -> Merge => #20
            #20, #14 -> LessThan(Operand=IntProperty(Value=66)) => #21
            #11, #21 -> Zip
            -> LogicalAnd
            -> Condition => #24
                WorkflowInput Source1
                -> WorkflowOutput
            #13 -> PropertyMapping(Value) => #25
            #20, #25 -> GreaterThan(Operand=IntProperty(Value=66)) => #26
            #11, #26 -> Zip
            -> LogicalAnd
            -> Condition => #29
                WorkflowInput Source1
                -> WorkflowOutput
            #10 -> Equal(Operand=IntProperty(Value=2)) => #30
            #30, #26 -> Zip
            -> LogicalAnd
            -> Condition => #33
                WorkflowInput Source1
                -> WorkflowOutput
            #24, #33 -> Merge
            -> BooleanProperty(Value=true) => #35
            #30, #21 -> Zip
            -> LogicalAnd
            -> Condition => #38
                WorkflowInput Source1
                -> WorkflowOutput
            #29, #38 -> Merge
            -> BooleanProperty(Value=false) => #40
            #35, #40 -> Merge
            -> Take(Count=1)
            -> MulticastSubject Correct => #43
            -> Disable Take(Count=1) => #44
            #43 -> Disable Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Disable IntProperty(Value=1) => #46
            #46, #12 -> Disable Zip
            -> Disable Take(Count=1)
            -> Disable Add => #49
            #43 -> Disable Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> Disable IntProperty(Value=0) => #51
            #51, #12 -> Disable Zip
            -> Disable Add => #53
            #49, #53 -> Disable Merge
            -> Disable MulticastSubject CorrectCount => #55
            #44, #55 -> Disable Zip
            -> Disable MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #4
        SubscribeSubject ResponseWindow
        -> PropertyMapping(DueTime) => #6
        #2, #6 -> Delay(DueTime=PT3S)
        -> BooleanProperty(Value=true) => #8
        #4, #8 -> Merge
        -> Take(Count=1)
        -> MulticastSubject AbortTrial => #11
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany Feedback => #13
            SubscribeSubject Correct => #0
            -> Condition Yes
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany Success
                SubscribeSubject FirstLick => #0
                -> Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=2))
                    -> WorkflowOutput
                -> SelectMany RewardRight => #2
                    WorkflowInput Source1
                    -> Disable SelectMany RewardTone(Description=SoundCard)
                        SubscribeSubject RewardDur
                        -> PropertyMapping(DueTime) => #1
                        WorkflowInput Source1 => #2
                        ExternalizedMapping(SoundLevel) => #3
                        Source2=#2, Source2=#3 -> Sink SetLevel => #4
                            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                            WorkflowInput Source1 => #1
                            #1, #0 -> IntProperty(Value=80)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: (it-107.54)/-0.0764
                            -> PropertyMapping(Value)
                            -> IntProperty(Value=360)
                            -> Sink Left
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> Sink Right
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> WorkflowOutput
                        SubscribeSubject RewardID
                        -> PropertyMapping(Value) => #6
                        #4, #6 -> IntProperty(Value=5)
                        -> Take(Count=1)
                        -> MulticastSubject SoundIndex
                        -> Timestamp
                        -> MemberSelector(Selector=Timestamp.TimeOfDay)
                        -> MulticastSubject RewardToneTime => #12
                        #12, #1 -> Delay(DueTime=PT0.8S)
                        -> WorkflowOutput
                    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve)
                    -> MulticastSubject BehModule => #3
                    SubscribeSubject RightValveTime
                    -> PropertyMapping(DueTime) => #5
                    #3, #5 -> Delay(DueTime=PT0.04S)
                    -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve)
                    -> MulticastSubject BehModule
                    -> IntProperty(Value=1)
                    -> MulticastSubject "RewSide "
                    -> WorkflowOutput
                #0 -> Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> SelectMany RewardLeft => #4
                    WorkflowInput Source1
                    -> Disable SelectMany RewardTone(Description=SoundCard)
                        SubscribeSubject RewardDur
                        -> PropertyMapping(DueTime) => #1
                        WorkflowInput Source1 => #2
                        ExternalizedMapping(SoundLevel) => #3
                        Source2=#2, Source2=#3 -> Sink SetLevel => #4
                            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                            WorkflowInput Source1 => #1
                            #1, #0 -> IntProperty(Value=80)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: (it-107.54)/-0.0764
                            -> PropertyMapping(Value)
                            -> IntProperty(Value=360)
                            -> Sink Left
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> Sink Right
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> WorkflowOutput
                        SubscribeSubject RewardID
                        -> PropertyMapping(Value) => #6
                        #4, #6 -> IntProperty(Value=5)
                        -> Take(Count=1)
                        -> MulticastSubject SoundIndex
                        -> Timestamp
                        -> MemberSelector(Selector=Timestamp.TimeOfDay)
                        -> MulticastSubject RewardToneTime => #12
                        #12, #1 -> Delay(DueTime=PT0.8S)
                        -> WorkflowOutput
                    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke1Valve)
                    -> MulticastSubject BehModule => #3
                    SubscribeSubject LeftValveTime
                    -> PropertyMapping(DueTime) => #5
                    #3, #5 -> Delay(DueTime=PT0.04S)
                    -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve)
                    -> MulticastSubject BehModule
                    -> IntProperty(Value=0)
                    -> MulticastSubject "RewSide "
                    -> WorkflowOutput
                #4, #2 -> Merge
                -> WorkflowOutput
            -> IntProperty(Value=1) => #3
            #0 -> Condition No
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> SelectMany Failure
                WorkflowInput Source1
                -> Disable IntProperty(Value=1)
                -> Disable MulticastSubject Attempts
                -> SelectMany Timeout
                    WorkflowInput Source1 => #0
                    SubscribeSubject TimeoutDuration
                    -> PropertyMapping(DueTime) => #2
                    #0, #2 -> Delay(DueTime=PT3S)
                    -> WorkflowOutput
                -> WorkflowOutput
            -> IntProperty(Value=0) => #6
            #3, #6 -> Merge
            -> WorkflowOutput
        #11 -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=-1) => #15
        #13, #15 -> Merge
        -> MulticastSubject TrialOutcome
        -> Take(Count=1)
        -> WorkflowOutput
        #2, #3 -> GroupWorkflow Record_Latency
            SubscribeSubject TrialEnd
            -> Condition => #1
                WorkflowInput Source1
                -> WorkflowOutput
            WorkflowInput Source1
            -> SelectMany Start_Timer => #3
                Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.001S)
                -> MulticastSubject Time
                -> WorkflowOutput
            WorkflowInput Source2 => #4
            #1, #4 -> Merge => #5
            #3, #5 -> TakeUntil
            -> TakeLast(Count=1)
            -> MulticastSubject "Response_Latency (ms)"
            -> WorkflowOutput
    #0 -> Condition Stage_1
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> SelectMany Habituation => #4
        GroupWorkflow Coin_Flip => #0
            Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
            -> Bonsai.Numerics.Distributions.Sample
            -> Take(Count=1)
            -> WorkflowOutput
        -> Condition Heads => #1
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Condition PT
            SubscribeSubject Stim_Type => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=PT))
            -> WorkflowOutput
        -> SelectMany 0 => #3
            SubscribeSubject Stim_Dur
            -> PropertyMapping(DueTime) => #1
            ExternalizedMapping(Value(DisplayName=Octave))
            -> FloatProperty(Value=0) => #3
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(float)
                def process(value):
                  import math
                  reference_freq = 4000
                  return math.log((2**value) * reference_freq)/math.log(2)
            -> Sink SetLevel
                WorkflowInput Source1
                -> IntProperty(Value=90)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: (it-107.54)/-0.0764
                -> PropertyMapping(Value)
                -> IntProperty(Value=229)
                -> Sink Left
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> Sink Right
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> WorkflowOutput
            -> MulticastSubject Freq => #6
            #6, #1 -> Delay(DueTime=PT0.3S)
            -> IntProperty(Value=3)
            -> MulticastSubject StopSound
            -> Take(Count=1)
            -> WorkflowOutput
            #3 -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(float)
                def process(value):
                  import math
                  reference_freq = 4000
                  result =  (2**value  * reference_freq) / 1000 # get freq in kHz
                  return round(result, 1)
            -> MulticastSubject Tone
        #1 -> Condition WN
            SubscribeSubject Stim_Type => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=WN))
            -> WorkflowOutput
        -> SelectMany 50 => #5
            SubscribeSubject StimID
            -> PropertyMapping(Value) => #1
            WorkflowInput Source1 => #2
            ExternalizedMapping(Value(DisplayName=Low_Amp))
            -> IntProperty(Value=50)
            -> MulticastSubject WN_Amp
            -> GroupWorkflow Convert_To_Bonsai_Amp
                SubscribeSubject Speaker_Y_Incercept => #0
                SubscribeSubject Speaker_Slope
                -> PropertyMapping(Value) => #2
                WorkflowInput Source1 => #3
                #3, #0 -> Zip
                -> Subtract => #5
                #5, #2 -> Divide(Operand=DoubleProperty(Value=1.3840476180425894))
                -> WorkflowOutput
            -> PropertyMapping(SoundLevel) => #7
            #2, #7 -> Sink SetLevel => #8
                ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                WorkflowInput Source1 => #1
                #1, #0 -> IntProperty(Value=60)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: (it-107.54)/-0.0764
                -> PropertyMapping(Value)
                -> IntProperty(Value=622)
                -> Sink Left
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> Sink Right
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> WorkflowOutput
            #8, #1 -> IntProperty(Value=3)
            -> MulticastSubject SoundIndex => #10
            SubscribeSubject Stim_Dur
            -> PropertyMapping(DueTime) => #12
            #10, #12 -> Delay(DueTime=PT0.3S)
            -> IntProperty(Value=30)
            -> MulticastSubject SoundIndex
            -> Take(Count=1)
            -> WorkflowOutput
        #3, #5 -> Merge
        -> SelectMany '"Go"Cue'
            WorkflowInput Source1 => #0
            SubscribeSubject GoCueDur
            -> PropertyMapping(DueTime) => #2
            #0, #2 -> Delay(DueTime=PT0.3S)
            -> WorkflowOutput
        -> SelectMany RewardLeft => #8
            WorkflowInput Source1
            -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke1Valve)
            -> MulticastSubject BehModule => #2
            SubscribeSubject LeftValveTime
            -> PropertyMapping(DueTime) => #4
            #2, #4 -> Delay(DueTime=PT0.048S)
            -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve)
            -> MulticastSubject BehModule
            -> IntProperty(Value=0)
            -> MulticastSubject "RewSide "
            -> WorkflowOutput
        #0 -> Condition Tails => #9
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> Condition PT
            SubscribeSubject Stim_Type => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=PT))
            -> WorkflowOutput
        -> SelectMany 2 => #11
            SubscribeSubject Stim_Dur
            -> PropertyMapping(DueTime) => #1
            ExternalizedMapping(Value(DisplayName=Octave))
            -> FloatProperty(Value=2) => #3
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(float)
                def process(value):
                  import math
                  reference_freq = 4000
                  return math.log((2**value) * reference_freq)/math.log(2)
            -> Sink SetLevel
                WorkflowInput Source1
                -> IntProperty(Value=90)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: (it-107.54)/-0.0764
                -> PropertyMapping(Value)
                -> IntProperty(Value=229)
                -> Sink Left
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> Sink Right
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> WorkflowOutput
            -> MulticastSubject Freq => #6
            #6, #1 -> Delay(DueTime=PT0.3S)
            -> IntProperty(Value=3)
            -> MulticastSubject StopSound
            -> Take(Count=1)
            -> WorkflowOutput
            #3 -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(float)
                def process(value):
                  import math
                  reference_freq = 4000
                  result =  (2**value  * reference_freq) / 1000 # get freq in kHz
                  return round(result, 1)
            -> MulticastSubject Tone
        #9 -> Condition WN
            SubscribeSubject Stim_Type => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=WN))
            -> WorkflowOutput
        -> SelectMany 82 => #13
            SubscribeSubject StimID
            -> PropertyMapping(Value) => #1
            WorkflowInput Source1 => #2
            ExternalizedMapping(Value(DisplayName=Low_Amp))
            -> IntProperty(Value=82)
            -> MulticastSubject WN_Amp
            -> PropertyMapping(SoundLevel) => #6
            #2, #6 -> Sink SetLevel => #7
                ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                WorkflowInput Source1 => #1
                #1, #0 -> IntProperty(Value=92)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: (it-107.54)/-0.0764
                -> PropertyMapping(Value)
                -> IntProperty(Value=203)
                -> Sink Left
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> Sink Right
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> WorkflowOutput
            #7, #1 -> IntProperty(Value=3)
            -> MulticastSubject SoundIndex => #9
            SubscribeSubject Stim_Dur
            -> PropertyMapping(DueTime) => #11
            #9, #11 -> Delay(DueTime=PT0.3S)
            -> IntProperty(Value=30)
            -> MulticastSubject SoundIndex
            -> Take(Count=1)
            -> WorkflowOutput
        #11, #13 -> Merge
        -> SelectMany '"Go"Cue'
            WorkflowInput Source1 => #0
            SubscribeSubject GoCueDur
            -> PropertyMapping(DueTime) => #2
            #0, #2 -> Delay(DueTime=PT0.3S)
            -> WorkflowOutput
        -> SelectMany RewardRight => #16
            WorkflowInput Source1
            -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve)
            -> MulticastSubject BehModule => #2
            SubscribeSubject RightValveTime
            -> PropertyMapping(DueTime) => #4
            #2, #4 -> Delay(DueTime=PT0.049S)
            -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve)
            -> MulticastSubject BehModule
            -> IntProperty(Value=1)
            -> MulticastSubject "RewSide "
            -> WorkflowOutput
        #8, #16 -> Merge
        -> SelectMany Write_Missing_Variables
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.IronPython.PythonTransform NaN => #1
              Script:
                from System import Single

                @returns(Single)
                def process(value):
                  return (Single(float.NaN))
            -> MulticastSubject TrialOutcome
            -> IntProperty(Value=0) => #3
            #1 -> MulticastSubject CorrectCount
            -> IntProperty(Value=0) => #5
            #1 -> MulticastSubject "Response_Latency (ms)"
            -> IntProperty(Value=0) => #7
            #1 -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds
              Expression: TimeSpan.FromMilliseconds(it)
            -> MulticastSubject ResponseWindow
            -> IntProperty(Value=0) => #10
            #1 -> MulticastSubject FirstLick
            -> IntProperty(Value=0) => #12
            #1 -> MulticastSubject TrialOutcome
            -> IntProperty(Value=0) => #14
            #1 -> MulticastSubject "Response_Latency (ms)"
            -> IntProperty(Value=0) => #16
            #1 -> MulticastSubject Nb_Of_Stim
            -> IntProperty(Value=0) => #18
            #0 -> BooleanProperty(Value=false) => #19
            -> MulticastSubject Correct
            -> IntProperty(Value=0) => #21
            #19 -> MulticastSubject AbortTrial
            -> IntProperty(Value=0) => #23
            #19 -> MulticastSubject Anti_Bias
            -> IntProperty(Value=0) => #25
            #3, #5, #7, #10, #12, #14, #16, #18, #21, #23, #25 -> Merge
            -> WorkflowOutput
        -> WorkflowOutput
    #0 -> Condition Stage_2
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=2))
        -> WorkflowOutput
    -> SelectMany Lick_To_Release => #6
        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=1) => #2
        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=2) => #5
        #2, #5 -> Merge
        -> Take(Count=1)
        -> Sink ResetSpouts
            SubscribeSubject Beam1Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BooleanProperty(Value=true)
            -> MulticastSubject Beam1Bool

            SubscribeSubject Beam2Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BooleanProperty(Value=true)
            -> MulticastSubject Beam2Bool
        -> Sink RecordFirstLick => #9
            WorkflowInput Source1
            -> MulticastSubject FirstLick
            -> WorkflowOutput
        -> Condition Left => #10
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> Condition PT
            SubscribeSubject Stim_Type => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=PT))
            -> WorkflowOutput
        -> SelectMany 0 => #12
            SubscribeSubject Stim_Dur
            -> PropertyMapping(DueTime) => #1
            ExternalizedMapping(Value(DisplayName=Octave))
            -> FloatProperty(Value=0) => #3
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(float)
                def process(value):
                  import math
                  reference_freq = 4000
                  return math.log((2**value) * reference_freq)/math.log(2)
            -> Sink SetLevel
                WorkflowInput Source1
                -> IntProperty(Value=90)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: (it-107.54)/-0.0764
                -> PropertyMapping(Value)
                -> IntProperty(Value=229)
                -> Sink Left
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> Sink Right
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> WorkflowOutput
            -> MulticastSubject Freq => #6
            #6, #1 -> Delay(DueTime=PT0.3S)
            -> IntProperty(Value=3)
            -> MulticastSubject StopSound
            -> Take(Count=1)
            -> WorkflowOutput
            #3 -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(float)
                def process(value):
                  import math
                  reference_freq = 4000
                  result =  (2**value  * reference_freq) / 1000 # get freq in kHz
                  return round(result, 1)
            -> MulticastSubject Tone
        #10 -> Condition WN
            SubscribeSubject Stim_Type => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=WN))
            -> WorkflowOutput
        -> SelectMany 50 => #14
            SubscribeSubject StimID
            -> PropertyMapping(Value) => #1
            WorkflowInput Source1 => #2
            ExternalizedMapping(Value(DisplayName=Low_Amp))
            -> IntProperty(Value=50)
            -> MulticastSubject WN_Amp
            -> GroupWorkflow Convert_To_Bonsai_Amp
                SubscribeSubject Speaker_Y_Incercept => #0
                SubscribeSubject Speaker_Slope
                -> PropertyMapping(Value) => #2
                WorkflowInput Source1 => #3
                #3, #0 -> Zip
                -> Subtract => #5
                #5, #2 -> Divide(Operand=DoubleProperty(Value=1.3840476180425894))
                -> WorkflowOutput
            -> PropertyMapping(SoundLevel) => #7
            #2, #7 -> Sink SetLevel => #8
                ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                WorkflowInput Source1 => #1
                #1, #0 -> IntProperty(Value=60)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: (it-107.54)/-0.0764
                -> PropertyMapping(Value)
                -> IntProperty(Value=622)
                -> Sink Left
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> Sink Right
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> WorkflowOutput
            #8, #1 -> IntProperty(Value=3)
            -> MulticastSubject SoundIndex => #10
            SubscribeSubject Stim_Dur
            -> PropertyMapping(DueTime) => #12
            #10, #12 -> Delay(DueTime=PT0.3S)
            -> IntProperty(Value=30)
            -> MulticastSubject SoundIndex
            -> Take(Count=1)
            -> WorkflowOutput
        #12, #14 -> Merge
        -> SelectMany '"Go"Cue'
            WorkflowInput Source1 => #0
            SubscribeSubject GoCueDur
            -> PropertyMapping(DueTime) => #2
            #0, #2 -> Delay(DueTime=PT0.3S)
            -> WorkflowOutput
        -> SelectMany RewardLeft => #17
            WorkflowInput Source1
            -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke1Valve)
            -> MulticastSubject BehModule => #2
            SubscribeSubject LeftValveTime
            -> PropertyMapping(DueTime) => #4
            #2, #4 -> Delay(DueTime=PT0.04S)
            -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve)
            -> MulticastSubject BehModule
            -> IntProperty(Value=0)
            -> MulticastSubject "RewSide "
            -> WorkflowOutput
        #9 -> Condition Right => #18
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> Condition PT
            SubscribeSubject Stim_Type => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=PT))
            -> WorkflowOutput
        -> SelectMany 2 => #20
            SubscribeSubject Stim_Dur
            -> PropertyMapping(DueTime) => #1
            ExternalizedMapping(Value(DisplayName=Octave))
            -> FloatProperty(Value=2) => #3
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(float)
                def process(value):
                  import math
                  reference_freq = 4000
                  return math.log((2**value) * reference_freq)/math.log(2)
            -> Sink SetLevel
                WorkflowInput Source1
                -> IntProperty(Value=90)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: (it-107.54)/-0.0764
                -> PropertyMapping(Value)
                -> IntProperty(Value=229)
                -> Sink Left
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> Sink Right
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> WorkflowOutput
            -> MulticastSubject Freq => #6
            #6, #1 -> Delay(DueTime=PT0.3S)
            -> IntProperty(Value=3)
            -> MulticastSubject StopSound
            -> Take(Count=1)
            -> WorkflowOutput
            #3 -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(float)
                def process(value):
                  import math
                  reference_freq = 4000
                  result =  (2**value  * reference_freq) / 1000 # get freq in kHz
                  return round(result, 1)
            -> MulticastSubject Tone
        #18 -> Condition WN
            SubscribeSubject Stim_Type => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=WN))
            -> WorkflowOutput
        -> SelectMany 82 => #22
            SubscribeSubject StimID
            -> PropertyMapping(Value) => #1
            WorkflowInput Source1 => #2
            ExternalizedMapping(Value(DisplayName=Low_Amp))
            -> IntProperty(Value=82)
            -> MulticastSubject WN_Amp
            -> GroupWorkflow Convert_To_Bonsai_Amp
                SubscribeSubject Speaker_Y_Incercept => #0
                SubscribeSubject Speaker_Slope
                -> PropertyMapping(Value) => #2
                WorkflowInput Source1 => #3
                #3, #0 -> Zip
                -> Subtract => #5
                #5, #2 -> Divide(Operand=DoubleProperty(Value=1.3840476180425894))
                -> WorkflowOutput
            -> PropertyMapping(SoundLevel) => #7
            #2, #7 -> Sink SetLevel => #8
                ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                WorkflowInput Source1 => #1
                #1, #0 -> IntProperty(Value=60)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: (it-107.54)/-0.0764
                -> PropertyMapping(Value)
                -> IntProperty(Value=622)
                -> Sink Left
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> Sink Right
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> WorkflowOutput
            #8, #1 -> IntProperty(Value=3)
            -> MulticastSubject SoundIndex => #10
            SubscribeSubject Stim_Dur
            -> PropertyMapping(DueTime) => #12
            #10, #12 -> Delay(DueTime=PT0.3S)
            -> IntProperty(Value=30)
            -> MulticastSubject SoundIndex
            -> Take(Count=1)
            -> WorkflowOutput
        #20, #22 -> Merge
        -> SelectMany '"Go"Cue'
            WorkflowInput Source1 => #0
            SubscribeSubject GoCueDur
            -> PropertyMapping(DueTime) => #2
            #0, #2 -> Delay(DueTime=PT0.3S)
            -> WorkflowOutput
        -> SelectMany RewardRight => #25
            WorkflowInput Source1
            -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve)
            -> MulticastSubject BehModule => #2
            SubscribeSubject RightValveTime
            -> PropertyMapping(DueTime) => #4
            #2, #4 -> Delay(DueTime=PT0.04S)
            -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve)
            -> MulticastSubject BehModule
            -> IntProperty(Value=1)
            -> MulticastSubject "RewSide "
            -> WorkflowOutput
        #17, #25 -> Merge
        -> SelectMany Write_Missing_Variables
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.IronPython.PythonTransform NaN => #1
              Script:
                from System import Single

                @returns(Single)
                def process(value):
                  return (Single(float.NaN))
            -> MulticastSubject TrialOutcome
            -> IntProperty(Value=0) => #3
            #1 -> MulticastSubject CorrectCount
            -> IntProperty(Value=0) => #5
            #1 -> MulticastSubject "Response_Latency (ms)"
            -> IntProperty(Value=0) => #7
            #1 -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds
              Expression: TimeSpan.FromMilliseconds(it)
            -> MulticastSubject ResponseWindow
            -> IntProperty(Value=0) => #10
            #1 -> Disable MulticastSubject FirstLick
            -> Disable IntProperty(Value=0) => #12
            #1 -> MulticastSubject TrialOutcome
            -> IntProperty(Value=0) => #14
            #1 -> MulticastSubject Nb_Of_Stim
            -> IntProperty(Value=0) => #16
            #0 -> BooleanProperty(Value=false) => #17
            -> MulticastSubject Correct
            -> IntProperty(Value=0) => #19
            #17 -> MulticastSubject AbortTrial
            -> IntProperty(Value=0) => #21
            #17 -> MulticastSubject Anti_Bias
            -> IntProperty(Value=0) => #23
            #3, #5, #7, #10, #12, #14, #19, #21, #23, #16 -> Merge
            -> WorkflowOutput
        -> WorkflowOutput
    #0 -> Condition Stage_3
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=3))
        -> WorkflowOutput
    -> SelectMany Three_And_Three => #8
        WorkflowInput Source1
        -> SelectMany Response
            SubscribeSubject Beam1Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> IntProperty(Value=0) => #2
            SubscribeSubject Beam2Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> IntProperty(Value=1) => #5
            #2, #5 -> Merge
            -> Take(Count=1)
            -> Sink ResetSpouts
                SubscribeSubject Beam1Bool
                -> Condition
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> BooleanProperty(Value=true)
                -> MulticastSubject Beam1Bool => #3
                SubscribeSubject Beam2Bool
                -> Condition
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> BooleanProperty(Value=true)
                -> MulticastSubject Beam2Bool => #7
                #3, #7 -> Merge
                -> WorkflowOutput
            -> Sink RecordFirstLick => #9
                WorkflowInput Source1
                -> MulticastSubject FirstLick
                -> WorkflowOutput
            SubscribeSubject Correct_Side => #10
            #9, #10 -> CombineLatest => #11
            -> MemberSelector(Selector=Item1) => #12
            #11 -> Equal => #13
            -> Condition Correct
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> BooleanProperty(Value=true)
            -> MulticastSubject Correct => #17
            #17, #12 -> Zip
            -> MemberSelector(Selector=Item2) => #19
            -> Condition Left => #20
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> Condition PT
                SubscribeSubject Stim_Type => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=StringProperty(Value=PT))
                -> WorkflowOutput
            -> SelectMany 0 => #22
                SubscribeSubject Stim_Dur
                -> PropertyMapping(DueTime) => #1
                ExternalizedMapping(Value(DisplayName=Octave))
                -> FloatProperty(Value=0) => #3
                -> Bonsai.Scripting.IronPython.PythonTransform
                  Script:
                    @returns(float)
                    def process(value):
                      import math
                      reference_freq = 4000
                      return math.log((2**value) * reference_freq)/math.log(2)
                -> Sink SetLevel
                    WorkflowInput Source1
                    -> IntProperty(Value=90)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: (it-107.54)/-0.0764
                    -> PropertyMapping(Value)
                    -> IntProperty(Value=229)
                    -> Sink Left
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> Sink Right
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> WorkflowOutput
                -> MulticastSubject Freq => #6
                #6, #1 -> Delay(DueTime=PT0.3S)
                -> IntProperty(Value=3)
                -> MulticastSubject StopSound
                -> Take(Count=1)
                -> WorkflowOutput
                #3 -> Bonsai.Scripting.IronPython.PythonTransform
                  Script:
                    @returns(float)
                    def process(value):
                      import math
                      reference_freq = 4000
                      result =  (2**value  * reference_freq) / 1000 # get freq in kHz
                      return round(result, 1)
                -> MulticastSubject Tone
            #20 -> Condition WN
                SubscribeSubject Stim_Type => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=StringProperty(Value=WN))
                -> WorkflowOutput
            -> SelectMany 50 => #24
                SubscribeSubject StimID
                -> PropertyMapping(Value) => #1
                WorkflowInput Source1 => #2
                ExternalizedMapping(Value(DisplayName=Low_Amp))
                -> IntProperty(Value=50)
                -> MulticastSubject WN_Amp
                -> GroupWorkflow Convert_To_Bonsai_Amp
                    SubscribeSubject Speaker_Y_Incercept => #0
                    SubscribeSubject Speaker_Slope
                    -> PropertyMapping(Value) => #2
                    WorkflowInput Source1 => #3
                    #3, #0 -> Zip
                    -> Subtract => #5
                    #5, #2 -> Divide(Operand=DoubleProperty(Value=1.3840476180425894))
                    -> WorkflowOutput
                -> PropertyMapping(SoundLevel) => #7
                #2, #7 -> Sink SetLevel => #8
                    ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                    WorkflowInput Source1 => #1
                    #1, #0 -> IntProperty(Value=60)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: (it-107.54)/-0.0764
                    -> PropertyMapping(Value)
                    -> IntProperty(Value=622)
                    -> Sink Left
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> Sink Right
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> WorkflowOutput
                #8, #1 -> IntProperty(Value=3)
                -> MulticastSubject SoundIndex => #10
                SubscribeSubject Stim_Dur
                -> PropertyMapping(DueTime) => #12
                #10, #12 -> Delay(DueTime=PT0.3S)
                -> IntProperty(Value=30)
                -> MulticastSubject SoundIndex
                -> Take(Count=1)
                -> WorkflowOutput
            #22, #24 -> Merge
            -> SelectMany '"Go"Cue'
                WorkflowInput Source1 => #0
                SubscribeSubject GoCueDur
                -> PropertyMapping(DueTime) => #2
                #0, #2 -> Delay(DueTime=PT0.3S)
                -> WorkflowOutput
            -> SelectMany RewardLeft => #27
                WorkflowInput Source1
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke1Valve)
                -> MulticastSubject BehModule => #2
                SubscribeSubject LeftValveTime
                -> PropertyMapping(DueTime) => #4
                #2, #4 -> Delay(DueTime=PT0.04S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve)
                -> MulticastSubject BehModule
                -> IntProperty(Value=0)
                -> MulticastSubject "RewSide "
                -> WorkflowOutput
            #19 -> Condition Right => #28
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Condition PT
                SubscribeSubject Stim_Type => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=StringProperty(Value=PT))
                -> WorkflowOutput
            -> SelectMany 2 => #30
                SubscribeSubject Stim_Dur
                -> PropertyMapping(DueTime) => #1
                ExternalizedMapping(Value(DisplayName=Octave))
                -> FloatProperty(Value=2) => #3
                -> Bonsai.Scripting.IronPython.PythonTransform
                  Script:
                    @returns(float)
                    def process(value):
                      import math
                      reference_freq = 4000
                      return math.log((2**value) * reference_freq)/math.log(2)
                -> Sink SetLevel
                    WorkflowInput Source1
                    -> IntProperty(Value=90)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: (it-107.54)/-0.0764
                    -> PropertyMapping(Value)
                    -> IntProperty(Value=229)
                    -> Sink Left
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> Sink Right
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> WorkflowOutput
                -> MulticastSubject Freq => #6
                #6, #1 -> Delay(DueTime=PT0.3S)
                -> IntProperty(Value=3)
                -> MulticastSubject StopSound
                -> Take(Count=1)
                -> WorkflowOutput
                #3 -> Bonsai.Scripting.IronPython.PythonTransform
                  Script:
                    @returns(float)
                    def process(value):
                      import math
                      reference_freq = 4000
                      result =  (2**value  * reference_freq) / 1000 # get freq in kHz
                      return round(result, 1)
                -> MulticastSubject Tone
            #28 -> Condition WN
                SubscribeSubject Stim_Type => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=StringProperty(Value=WN))
                -> WorkflowOutput
            -> SelectMany 82 => #32
                SubscribeSubject StimID
                -> PropertyMapping(Value) => #1
                WorkflowInput Source1 => #2
                ExternalizedMapping(Value(DisplayName=Low_Amp))
                -> IntProperty(Value=82)
                -> MulticastSubject WN_Amp
                -> GroupWorkflow Convert_To_Bonsai_Amp
                    SubscribeSubject Speaker_Y_Incercept => #0
                    SubscribeSubject Speaker_Slope
                    -> PropertyMapping(Value) => #2
                    WorkflowInput Source1 => #3
                    #3, #0 -> Zip
                    -> Subtract => #5
                    #5, #2 -> Divide(Operand=DoubleProperty(Value=1.3840476180425894))
                    -> WorkflowOutput
                -> PropertyMapping(SoundLevel) => #7
                #2, #7 -> Sink SetLevel => #8
                    ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                    WorkflowInput Source1 => #1
                    #1, #0 -> IntProperty(Value=60)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: (it-107.54)/-0.0764
                    -> PropertyMapping(Value)
                    -> IntProperty(Value=622)
                    -> Sink Left
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> Sink Right
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> WorkflowOutput
                #8, #1 -> IntProperty(Value=3)
                -> MulticastSubject SoundIndex => #10
                SubscribeSubject Stim_Dur
                -> PropertyMapping(DueTime) => #12
                #10, #12 -> Delay(DueTime=PT0.3S)
                -> IntProperty(Value=30)
                -> MulticastSubject SoundIndex
                -> Take(Count=1)
                -> WorkflowOutput
            #30, #32 -> Merge
            -> SelectMany '"Go"Cue'
                WorkflowInput Source1 => #0
                SubscribeSubject GoCueDur
                -> PropertyMapping(DueTime) => #2
                #0, #2 -> Delay(DueTime=PT0.3S)
                -> WorkflowOutput
            -> SelectMany RewardRight => #35
                WorkflowInput Source1
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve)
                -> MulticastSubject BehModule => #2
                SubscribeSubject RightValveTime
                -> PropertyMapping(DueTime) => #4
                #2, #4 -> Delay(DueTime=PT0.04S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve)
                -> MulticastSubject BehModule
                -> IntProperty(Value=1)
                -> MulticastSubject "RewSide "
                -> WorkflowOutput
            #27, #35 -> Merge => #36
            #13 -> Condition Incorrect
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> Take(Count=1)
            -> BooleanProperty(Value=false)
            -> MulticastSubject Correct
            -> SelectMany Do_Nothing => #41
                WorkflowInput Source1
                -> Bonsai.Scripting.IronPython.PythonTransform NaN
                  Script:
                    from System import Single

                    @returns(Single)
                    def process(value):
                      return (Single(float.NaN))
                -> MulticastSubject "RewSide "
                -> WorkflowOutput
            #36, #41 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany Set_Correct_Side
            SubscribeSubject Correct_Side => #0
            SubscribeSubject Correct_Side_Count => #1
            SubscribeSubject FirstLick => #2
            #2, #0 -> Zip
            -> Equal => #4
            -> Condition Correct_Side
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=1) => #6
            #6, #1 -> Zip
            -> Add
            -> MulticastSubject Correct_Side_Count => #9
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it%3 == 0
            -> IntProperty(Value=1) => #11
            #9 -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it%3 != 0
            -> IntProperty(Value=0) => #13
            #13, #11 -> Merge => #14
            SubscribeSubject Correct_Side => #15
            #14, #15 -> Zip
            -> Subtract
            -> Bonsai.Numerics.Abs
            -> MulticastSubject Correct_Side => #19
            #4 -> Condition Incorrect_Side
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> IntProperty(Value=0) => #21
            #19, #21 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany Write_Missing_Variables
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.IronPython.PythonTransform NaN => #1
              Script:
                from System import Single

                @returns(Single)
                def process(value):
                  return (Single(float.NaN))
            -> MulticastSubject TrialOutcome
            -> IntProperty(Value=0) => #3
            #1 -> MulticastSubject "Response_Latency (ms)"
            -> IntProperty(Value=0) => #5
            #1 -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds
              Expression: TimeSpan.FromMilliseconds(it)
            -> MulticastSubject ResponseWindow
            -> IntProperty(Value=0) => #8
            #1 -> Disable MulticastSubject CorrectCount
            -> Disable IntProperty(Value=0)
            #1 -> MulticastSubject Nb_Of_Stim
            -> IntProperty(Value=0) => #12
            #0 -> BooleanProperty(Value=false) => #13
            -> MulticastSubject AbortTrial
            -> IntProperty(Value=0) => #15
            #13 -> MulticastSubject Anti_Bias
            -> IntProperty(Value=0) => #17
            #3, #5, #8, #15, #17, #12 -> Merge
            -> WorkflowOutput
            #13 -> Disable MulticastSubject Correct
            -> Disable IntProperty(Value=0)
        -> Take(Count=1)
        -> WorkflowOutput
    #4, #6, #8, #2 -> Merge
    -> SelectMany Write_Stim_NaNs
        SubscribeSubject Stim_Type => #0
        -> Condition PT
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=PT))
            -> WorkflowOutput
        -> Bonsai.Scripting.IronPython.PythonTransform NaN
          Script:
            from System import Single

            @returns(Single)
            def process(value):
              return (Single(float.NaN))
        -> MulticastSubject WN_Amp => #3
        #0 -> Condition WN
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=WN))
            -> WorkflowOutput
        -> Bonsai.Scripting.IronPython.PythonTransform NaN
          Script:
            from System import Single

            @returns(Single)
            def process(value):
              return (Single(float.NaN))
        -> MulticastSubject Tone => #6
        #3, #6 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> Sink IncrementTrial
        SubscribeSubject TrialNumber => #0
        IntProperty(Value=1) => #1
        #0, #1 -> Zip
        -> Add
        -> MulticastSubject TrialNumber
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput
-> SelectMany EndTrial
    WorkflowInput Source1
    -> BooleanProperty(Value=true)
    -> MulticastSubject TrialEnd
    -> WorkflowOutput
-> Repeat => #11
SubscribeSubject Exp_End
-> Condition
    WorkflowInput Source1
    -> WorkflowOutput
-> SelectMany End_Processes
    WorkflowInput Source1
    -> SelectMany Valves_Closed
        WorkflowInput Source1 => #0
        -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve)
        -> MulticastSubject BehModule => #2
        #0 -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve)
        -> MulticastSubject BehModule => #4
        #2, #4 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Speakers_Off
        WorkflowInput Source1
        -> IntProperty(Value=30)
        -> MulticastSubject SoundIndex
        -> WorkflowOutput
    -> WorkflowOutput
-> Bonsai.Shaders.Delay(DueTime=PT1S) => #15
#11, #15 -> TakeUntil
-> WorkflowOutput

GroupWorkflow Save_Data
    SubscribeSubject FirstLick => #0
    SubscribeSubject TrialOutcome => #1
    SubscribeSubject TrialEnd
    -> Condition => #3
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject Animal_ID => #4
    SubscribeSubject "RewSide " => #5
    SubscribeSubject ITI => #6
    SubscribeSubject TrialNumber => #7
    SubscribeSubject AbortTrial => #8
    SubscribeSubject Correct => #9
    SubscribeSubject ResponseWindow => #10
    SubscribeSubject GoCueDur => #11
    SubscribeSubject CorrectCount => #12
    SubscribeSubject Trial_File_Name
    -> PropertyMapping(FileName) => #14
    SubscribeSubject "Response_Latency (ms)" => #15
    SubscribeSubject Rig_ID => #16
    SubscribeSubject Room_ID => #17
    #8, #12, #11, #6, #10, #17, #16 -> CombineLatest => #18
    SubscribeSubject Nb_Of_Stim => #19
    SubscribeSubject Stim_Type => #20
    SubscribeSubject Tone => #21
    #4, #7, #21, #0, #9, #5, #1 -> CombineLatest => #22
    #22, #18 -> CombineLatest => #23
    SubscribeSubject WN_Amp => #24
    SubscribeSubject Anti_Bias => #25
    SubscribeSubject Stage => #26
    #23, #15, #19, #20, #24, #25, #26 -> CombineLatest => #27
    SubscribeSubject Beam1Bool => #28
    -> Timestamp => #29
    -> MemberSelector(Selector=Value) => #30
    #29 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #31
    #28 -> StringProperty(Value=Beam1Bool) => #32
    #30, #31, #32 -> Zip => #33
    SubscribeSubject Beam2Bool => #34
    -> Timestamp => #35
    -> MemberSelector(Selector=Value) => #36
    #35 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #37
    #34 -> StringProperty(Value=Beam2Bool) => #38
    #36, #37, #38 -> Zip => #39
    #33, #39 -> Merge
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #41
      Expression:
        new(
        Item1 as State,
        Item2 as Time,
        Item3 as Spout
        )
    SubscribeSubject Licks_File_Name
    -> PropertyMapping(FileName) => #43
    #41, #43 -> Bonsai.IO.CsvWriter => #44
      FileName=../Data/TEST/SOUND_CAT_DISC_V2_TEST_2023_3_23/Detected_Licks.csv
      Delimiter=","
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true
    SubscribeSubject Exp_End
    -> Condition => #46
        WorkflowInput Source1
        -> WorkflowOutput
    #44, #46 -> TakeUntil
    -> Bonsai.Shaders.DelaySubscription(DueTime=PT0.5S)
    SubscribeSubject Stim_Dur => #49
    SubscribeSubject Anti_Bias => #50
    #27, #49, #50 -> CombineLatest => #51
    #51, #3 -> Sample
    -> Timestamp => #53
    -> MemberSelector(Selector=Value) => #54
    #53 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #55
    #54, #55 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #57
      Expression:
        new(
        Item1.Item1.Item1.Item1.Item1 as Animal_ID,
        Item1.Item1.Item1.Item1.Item2 as TrialNumber,
        Item1.Item1.Item1.Item1.Item3 as Tone,
        Item1.Item1.Item1.Item1.Item4 as FirstLick,
        Item1.Item1.Item1.Item1.Item5 as Correct,
        Item1.Item1.Item1.Item1.Item6 as Rewside,
        Item1.Item1.Item1.Item1.Item7 as TrialOutcome,

        Item1.Item1.Item1.Item2.Item1 as AbortTrial,
        Item1.Item1.Item1.Item2.Item2 as CorrectCount,
        Item1.Item1.Item1.Item2.Item3 as GoCueDur,
        Item1.Item1.Item1.Item2.Item4 as ITI,
        Item1.Item1.Item1.Item2.Item5 as ReponseWindow,
        Item1.Item1.Item1.Item2.Item6 as Room_ID,
        Item1.Item1.Item1.Item2.Item7 as Rig_ID,

        Item1.Item1.Item2 as Response_Latency,
        Item1.Item1.Item3 as Nb_Of_Stim,
        Item1.Item1.Item4 as Stim_Type,
        Item1.Item1.Item5 as WN_Amp,
        Item1.Item1.Item6 as Anti_Bias,
        Item1.Item1.Item7 as Stage,

        Item1.Item2 as Stim_Dur,
        Item1.Item3 as Anti_Bias,

        Item2 as Time
        )
    #57, #14 -> Bonsai.IO.CsvWriter => #58
      FileName=../Data/TEST/SOUND_CAT_DISC_V2_TEST_2023_3_23/Trial_Summary.csv
      Delimiter=","
      Append=true
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true
    #58, #46 -> TakeUntil
    -> Bonsai.Shaders.DelaySubscription(DueTime=PT0.5S)
    -> WorkflowOutput

GroupWorkflow Antibias
  Description:
    Takes n trials back and calculates the difference between what the mouse should've done Vs what it actually did
    Weigh this difference vector by an exponential kernel, then pass through a sigmoid function to generate P(Right)

    FirstLick --> Choice (here 1 for left, 0 for right)
    Tone/WN_Amp --> Stimulus, dictates where the mouse should lick (here 1 for left, 0 for right)

    Defailt params:
    - ant_bias_window = 30
    - exp_rate = 1
    - sigmoid_slope_0 = 2
  Workflow
    FloatProperty(Value=0) => #0
    -> ToArray
    -> BehaviorSubject Hit_Left
    #0 -> ToArray
    -> BehaviorSubject Rule_Left

    DoubleProperty(Value=0.5)
    -> BehaviorSubject P_Right

    ExternalizedMapping(Value(DisplayName=Anti_Bias_Window))
    -> IntProperty(Value=30)
    -> BehaviorSubject Anti_Bias_Window

    ExternalizedMapping(Value(DisplayName=Exp_Rate))
    -> FloatProperty(Value=1)
    -> BehaviorSubject Exp_Rate

    ExternalizedMapping(Value(DisplayName=Sigmoid_Slope_0))
    -> FloatProperty(Value=2)
    -> BehaviorSubject Sigmoid_Slope_0

    SubscribeSubject FirstLick => #16
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> FloatProperty(Value=1) => #18
    #16 -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=2))
        -> WorkflowOutput
    -> FloatProperty(Value=0) => #20
    #18, #20 -> Merge => #21
    SubscribeSubject AbortTrial
    -> Condition => #23
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    #21, #23 -> Sample => #24
    SubscribeSubject Tone => #25
    -> Condition <8 => #26
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=Boundary)) => #1
        #0, #1 -> LessThanOrEqual(Operand=FloatProperty(Value=8))
        -> WorkflowOutput
    SubscribeSubject Anti_Bias_Window => #27
    -> PropertyMapping(Count) => #28
    #27 -> PropertyMapping(Count) => #29
    #27 -> PropertyMapping(Value)
    -> IntProperty(Value=30) => #31
    SubscribeSubject WN_Amp => #32
    -> Condition <76 => #33
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=Boundary)) => #1
        #0, #1 -> LessThanOrEqual(Operand=FloatProperty(Value=76))
        -> WorkflowOutput
    #26, #33 -> Merge
    -> FloatProperty(Value=1) => #35
    #25 -> Condition >8 => #36
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=Boundary)) => #1
        #0, #1 -> GreaterThan(Operand=FloatProperty(Value=8))
        -> WorkflowOutput
    #32 -> Condition >76 => #37
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=Boundary)) => #1
        #0, #1 -> GreaterThan(Operand=FloatProperty(Value=76))
        -> WorkflowOutput
    #36, #37 -> Merge
    -> FloatProperty(Value=0) => #39
    #35, #39 -> Merge
    -> Skip(Count=2) => #41
    #41, #23 -> Sample => #42
    FloatProperty(Value=0) => #43
    #43, #31 -> Zip
    -> Bonsai.Scripting.IronPython.PythonTransform Gen_floats
      Script:
        @returns(list)
        def process(value):
          float_0 = value[0]
          window_size = value[1]
          result = []
          for _ in range(window_size):
            result.append(float_0)
          return result
    -> Merge
    -> Bonsai.Scripting.IronPython.PythonTransform NaN => #47
      Script:
        from System import Single

        @returns(Single)
        def process(value):
          return (Single(float.NaN))
    #24, #47 -> Merge => #48
    #48, #28 -> BufferCount(Count=30, Skip=1)
    -> SelectMany Count_Hit_Left
        WorkflowInput Source1
        -> Merge
        -> ToArray
        -> MulticastSubject Hit_Left
        -> WorkflowOutput
    -> Merge
    #42, #47 -> Merge => #52
    #52, #29 -> BufferCount(Count=30, Skip=1)
    -> SelectMany Count_Rule_Left
        WorkflowInput Source1
        -> Merge
        -> ToArray
        -> MulticastSubject Rule_Left
        -> WorkflowOutput
    -> Merge

    SubscribeSubject Hit_Left => #56
    SubscribeSubject Rule_Left => #57
    -> SelectMany Antibias_Params => #58
        SubscribeSubject Anti_Bias_Window => #0
        SubscribeSubject Exp_Rate => #1
        SubscribeSubject Sigmoid_Slope_0 => #2
        #0, #1, #2 -> Zip
        -> WorkflowOutput
    #56, #57, #58 -> Zip
    -> Bonsai.Scripting.IronPython.PythonTransform Gen_P_Right_V2
      Description:
        Takes 3 inputs:
        - array of previous left choices
        - array of previous a priori left
        - tuple of 3 items: trials back, exponential rate and sigmoid slope
        Outputs P(Right)
      Script:
        @returns(float)
        def process(value):
          import math
          hit_left = value[0] #
          rule_left = value[1] #
          diff = [e-rule_left[c] for c,e in enumerate(hit_left)] # difference between hit left and a priori left
          diff_reverse = diff[::-1] # reverse order of incoming array to get earliest trials first

          # weigh this diff_reverse array with an exponential kernel that emphasizes recent history
          trials_back = value[2][0] # set size of exponential window
          rate = value[2][1] # set rate of exponential distribution
          kernel_window = [x / 10.0 for x in range(0, trials_back, 1)] # create kernel range, divide by 10 to capture most releant section of exponential function
          exp_kernel = [rate*(math.exp(-rate*x)) for x in kernel_window] # calculate exp fct for every kernel value
          exp_kernel = [x/sum(exp_kernel) for x in exp_kernel] # normalise
          bias =  sum([diff_reverse[i] * exp_kernel[i] for i in range(len(diff_reverse)) if diff_reverse[i] == diff_reverse[i] and exp_kernel[i] == exp_kernel[i]]) # calculate dot product of diff_reverse with exp_kernel using list comprehension, ignores NaN values
          # bias --> positive means left-bias, negative means right bias

          # pass this bias through a sigmoid function to obtain p_right
          slope_0 = value[2][2] # slope of sigmoid at x = 0
          beta = slope_0 * 4 # follows naturally from differentiation
          p_right = 1 / (1+math.exp(-beta*bias))
          return p_right
          #return bias
    -> MulticastSubject P_Right

GroupWorkflow "Stats " => #20
  Description:
    Light Blue = Percent_Correct
    Red = Percent_Right_Licks
    Orange = Percent_Abort_Trial
    Dark Blue = Normalised Response Latency
  Workflow
    GroupWorkflow Percent_Correct => #0
        SubscribeSubject Visualizer_Window_Size
        -> PropertyMapping(Count) => #1
        SubscribeSubject Correct => #2
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1) => #4
        #2 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=0) => #6
        #4, #6 -> Merge => #7
        #7, #1 -> Bonsai.Dsp.Buffer(Count=30, Skip=1)
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0)
        -> MulticastSubject Percent_Correct
        -> WorkflowOutput
    GroupWorkflow Percent_Abort_Trial => #1
        SubscribeSubject Visualizer_Window_Size
        -> PropertyMapping(Count) => #1
        SubscribeSubject AbortTrial => #2
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1) => #4
        #2 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=0) => #6
        #4, #6 -> Merge => #7
        #7, #1 -> Bonsai.Dsp.Buffer(Count=30, Skip=1)
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0)
        -> WorkflowOutput
    GroupWorkflow Percent_First_Lick_Right => #2
        SubscribeSubject FirstLick => #0
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> IntProperty(Value=0) => #2
        #0 -> Condition
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> IntProperty(Value=1) => #4
        #2, #4 -> Merge => #5
        SubscribeSubject Visualizer_Window_Size
        -> PropertyMapping(Count) => #7
        #5, #7 -> Bonsai.Dsp.Buffer(Count=30, Skip=1)
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0)
        -> MulticastSubject Percent_Right_Licks
        -> WorkflowOutput
    GroupWorkflow Average_Normalised_Latency => #3
        SubscribeSubject Visualizer_Window_Size
        -> PropertyMapping(Count) => #1
        SubscribeSubject "Response_Latency (ms)" => #2
        #2, #1 -> Bonsai.Dsp.Buffer(Count=30, Skip=1)
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #5
        SubscribeSubject ResponseWindow
        -> MemberSelector(Selector=TotalSeconds)
        -> Multiply(Operand=DoubleProperty(Value=1000))
        -> PropertyMapping(Value) => #9
        #5, #9 -> Divide(Operand=DoubleProperty(Value=3000))
        -> WorkflowOutput
    DoubleProperty(Value=0) => #4
    #0, #4 -> Merge => #5
    DoubleProperty(Value=0) => #6
    #1, #6 -> Merge => #7
    DoubleProperty(Value=0) => #8
    #2, #8 -> Merge => #9
    DoubleProperty(Value=0) => #10
    #3, #10 -> Merge => #11
    #5, #7, #9, #11 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
      Expression:
        new(
        Item1 as Percent_Correct,
        Item2 as Percent_Abort_Trial,
        Item3 as Right_Bias,
        Item4 as Normalized_Response_Latency
        )
    GroupWorkflow Psycometric_Stat_PT => #14
        SubscribeSubject Correct => #0
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> FloatProperty(Value=1) => #2
        #0 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> FloatProperty(Value=0) => #4
        #2, #4 -> Merge => #5
        SubscribeSubject AbortTrial
        -> Condition => #7
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #5, #7 -> Sample => #8
        -> Condition 0
            SubscribeSubject Tone => #0
            ExternalizedMapping(Value)
            -> FloatProperty(Value=0)
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(float)
                def process(value):
                  import math
                  reference_freq = 4000
                  result =  (2**value  * reference_freq) / 1000 # get freq in kHz
                  return round(result, 1)
            -> PropertyMapping(Value) => #4
            #0, #4 -> Equal(Operand=FloatProperty(Value=4))
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #10
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        FloatProperty(Value=0) => #11
        #10, #11 -> Merge => #12
        #8 -> Condition 0.25
            SubscribeSubject Tone => #0
            ExternalizedMapping(Value)
            -> FloatProperty(Value=0.25)
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(float)
                def process(value):
                  import math
                  reference_freq = 4000
                  result =  (2**value  * reference_freq) / 1000 # get freq in kHz
                  return round(result, 1)
            -> PropertyMapping(Value) => #4
            #0, #4 -> Equal(Operand=FloatProperty(Value=4.8))
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #14
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        #14, #11 -> Merge => #15
        #8 -> Condition 0.5
            SubscribeSubject Tone => #0
            ExternalizedMapping(Value)
            -> FloatProperty(Value=0.5)
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(float)
                def process(value):
                  import math
                  reference_freq = 4000
                  result =  (2**value  * reference_freq) / 1000 # get freq in kHz
                  return round(result, 1)
            -> PropertyMapping(Value) => #4
            #0, #4 -> Equal(Operand=FloatProperty(Value=5.7))
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #17
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        #17, #11 -> Merge => #18
        #8 -> Condition 0.75
            SubscribeSubject Tone => #0
            ExternalizedMapping(Value)
            -> FloatProperty(Value=0.75)
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(float)
                def process(value):
                  import math
                  reference_freq = 4000
                  result =  (2**value  * reference_freq) / 1000 # get freq in kHz
                  return round(result, 1)
            -> PropertyMapping(Value) => #4
            #0, #4 -> Equal(Operand=FloatProperty(Value=6.7))
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #20
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        #20, #11 -> Merge => #21
        #8 -> Condition 1.25
            SubscribeSubject Tone => #0
            ExternalizedMapping(Value)
            -> FloatProperty(Value=1.25)
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(float)
                def process(value):
                  import math
                  reference_freq = 4000
                  result =  (2**value  * reference_freq) / 1000 # get freq in kHz
                  return round(result, 1)
            -> PropertyMapping(Value) => #4
            #0, #4 -> Equal(Operand=FloatProperty(Value=9.5))
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #23
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        #23, #11 -> Merge => #24
        #8 -> Condition 1.50
            SubscribeSubject Tone => #0
            ExternalizedMapping(Value)
            -> FloatProperty(Value=1.5)
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(float)
                def process(value):
                  import math
                  reference_freq = 4000
                  result =  (2**value  * reference_freq) / 1000 # get freq in kHz
                  return round(result, 1)
            -> PropertyMapping(Value) => #4
            #0, #4 -> Equal(Operand=FloatProperty(Value=11.3))
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #26
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        #26, #11 -> Merge => #27
        #8 -> Condition 1.75
            SubscribeSubject Tone => #0
            ExternalizedMapping(Value)
            -> FloatProperty(Value=1.75)
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(float)
                def process(value):
                  import math
                  reference_freq = 4000
                  result =  (2**value  * reference_freq) / 1000 # get freq in kHz
                  return round(result, 1)
            -> PropertyMapping(Value) => #4
            #0, #4 -> Equal(Operand=FloatProperty(Value=13.5))
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #29
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        #29, #11 -> Merge => #30
        #12, #15, #18, #21, #24, #27, #30 -> CombineLatest => #31
        #8 -> Condition 2.0
            SubscribeSubject Tone => #0
            ExternalizedMapping(Value)
            -> FloatProperty(Value=2)
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(float)
                def process(value):
                  import math
                  reference_freq = 4000
                  result =  (2**value  * reference_freq) / 1000 # get freq in kHz
                  return round(result, 1)
            -> PropertyMapping(Value) => #4
            #0, #4 -> Equal(Operand=FloatProperty(Value=16))
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #33
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        #33, #11 -> Merge => #34
        FloatProperty(Value=0) => #35
        #31, #34, #35 -> CombineLatest
        -> WorkflowOutput
    GroupWorkflow Psycometric_Stat_WN => #15
        SubscribeSubject Correct => #0
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> FloatProperty(Value=1) => #2
        #0 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> FloatProperty(Value=0) => #4
        #2, #4 -> Merge => #5
        SubscribeSubject AbortTrial
        -> Condition => #7
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #5, #7 -> Sample => #8
        -> Condition 50
            SubscribeSubject WN_Amp => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=FloatProperty(Value=50))
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #10
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        FloatProperty(Value=0) => #11
        #10, #11 -> Merge => #12
        #8 -> Condition 54
            SubscribeSubject WN_Amp => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=FloatProperty(Value=54))
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #14
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        #14, #11 -> Merge => #15
        #8 -> Condition 58
            SubscribeSubject WN_Amp => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=FloatProperty(Value=58))
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #17
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        #17, #11 -> Merge => #18
        #8 -> Condition 62
            SubscribeSubject WN_Amp => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=FloatProperty(Value=62))
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #20
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        #20, #11 -> Merge => #21
        #8 -> Condition 70
            SubscribeSubject WN_Amp => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=FloatProperty(Value=70))
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #23
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        #23, #11 -> Merge => #24
        #8 -> Condition 74
            SubscribeSubject WN_Amp => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=FloatProperty(Value=74))
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #26
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        #26, #11 -> Merge => #27
        #8 -> Condition 78
            SubscribeSubject WN_Amp => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=FloatProperty(Value=78))
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #29
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        #29, #11 -> Merge => #30
        #12, #15, #18, #21, #24, #27, #30 -> CombineLatest => #31
        #8 -> Condition 82
            SubscribeSubject WN_Amp => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=FloatProperty(Value=82))
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #33
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        #33, #11 -> Merge => #34
        FloatProperty(Value=0) => #35
        #31, #34, #35 -> CombineLatest
        -> WorkflowOutput
    #14, #15 -> Merge
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #17
      Expression:
        new(
        Item1.Item1 as S1,
        Item1.Item2 as S2,
        Item1.Item3 as S3,
        Item1.Item4 as S4,
        Item1.Item5 as S5,
        Item1.Item6 as S6,
        Item1.Item7 as S7,
        Item2 as S8,

        Item3 as Stim_Relative
        )
    #13, #17 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as General_Stats,
        Item2 as Psychometric_Stats
        )
    -> WorkflowOutput

    SubscribeSubject Correct
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> IntProperty(Value=1)
    -> Accumulate
    -> MulticastSubject CorrectCount
-> MemberSelector(Selector=General_Stats)
-> Bonsai.Design.Visualizers.RollingGraphBuilder
  ValueSelector="Percent_Correct,Percent_Abort_Trial,Right_Bias,Normalized_Response_Latency"
  SymbolType=None
  LineWidth=3
  Capacity=nil
  Min=nil
  Max=nil
#20 -> MemberSelector(Selector=Psychometric_Stats)
-> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Stim_Relative, ValueSelector="S1,S2,S3,S4,S5,S6,S7,S8", BaseAxis=X, BarType=Cluster, Capacity=8, Min=0, Max=1)

SubscribeSubject WN_Amp
