WorkflowBuilder(Version=2.7.0)
GroupWorkflow Task_Variables
    BooleanProperty(Value=false)
    -> BehaviorSubject Correct

    IntProperty(Value=0)
    -> PublishSubject TrialOutcome

    IntProperty(Value=0)
    -> BehaviorSubject FirstLick

    BooleanProperty(Value=false)
    -> BehaviorSubject Exp_End

    BooleanProperty(Value=false)
    -> BehaviorSubject TrialEnd

    FloatProperty(Value=0)
    -> BehaviorSubject Tone

    StringProperty(Value=QP04)
    -> BehaviorSubject MouseID

    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    IntProperty(Value=0)
    -> BehaviorSubject "RewSide "

    IntProperty(Value=0)
    -> BehaviorSubject DelayedReward

    IntProperty(Value=0)
    -> BehaviorSubject Reward

    BooleanProperty(Value=false)
    -> BehaviorSubject AbortTrial

    IntProperty(Value=0)
    -> BehaviorSubject Attempts

    IntProperty(Value=0)
    -> BehaviorSubject CorrectCount

    IntProperty(Value=0)
    -> BehaviorSubject RewardCount

    DoubleProperty(Value=0)
    -> BehaviorSubject Percent_Right_Licks

    IntProperty(Value=0)
    -> BehaviorSubject Time

    IntProperty(Value=0)
    -> BehaviorSubject "Response_Latency (ms)"

    IntProperty(Value=3)
    -> BehaviorSubject StimID

    FloatProperty(Value=0)
    -> BehaviorSubject WN_Amp

    DoubleProperty(Value=0)
    -> BehaviorSubject Percent_Correct

    FloatProperty(Value=0)
    -> BehaviorSubject Stim_Relative

    StringProperty
    -> BehaviorSubject Trial_Epoch

    BooleanProperty(Value=false) => #46
    -> BehaviorSubject Subscribe_Saving
    #46 -> BehaviorSubject Subscribe_Control_Params
    #46 -> BehaviorSubject Subscribe_Camera
    #46 -> BehaviorSubject Subscribe_Soundcard
    #46 -> BehaviorSubject Subscribe_Behaviour
    #46 -> BehaviorSubject Subscribe_Mega
    #46 -> BehaviorSubject Subscribe_Nano
    #46 -> BehaviorSubject Start_Protocol

    StringProperty(Value=Launch_Protocol) => #55
    StringProperty(Value=Launch_Protocol) => #56
    #55, #56 -> CombineLatest
    -> BehaviorSubject Event_Log

GroupWorkflow Render_Loop
    Bonsai.Shaders.CreateWindow
      Width=1
      Height=1
      VSync=On
      SwapSync=false
      ClearColor=Black
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Minimized
      DisplayDevice=Primary
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Resources.LoadResources

    Bonsai.Shaders.RenderFrame
    -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai) => #4
    -> PublishSubject Bonsai_Running
    #4 -> PublishSubject Green_Circle

GroupWorkflow Subscription_Order
    BooleanProperty(Value=true)
    -> Bonsai.Shaders.Delay(DueTime=PT1S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject Subscribe_Control_Params
    -> Bonsai.Shaders.Delay(DueTime=PT1S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject Subscribe_Saving
    -> Bonsai.Shaders.Delay(DueTime=PT0.2S)
    -> SelectMany Emulator? => #8
        SubscribeSubject Emulator
        -> WorkflowOutput
    -> Condition OFF
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> BooleanProperty(Value=true)
    -> MulticastSubject Subscribe_Camera
    -> Bonsai.Shaders.Delay(DueTime=PT0.2S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject Subscribe_Soundcard
    -> Bonsai.Shaders.Delay(DueTime=PT0.2S)
    -> SelectMany "Arduino ?" => #16
        SubscribeSubject Arduino
        -> WorkflowOutput
    -> Condition No
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> BooleanProperty(Value=true)
    -> MulticastSubject Subscribe_Behaviour => #19
    #16 -> Condition Yes
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true)
    -> MulticastSubject Subscribe_Nano => #22
    #19, #22 -> Merge
    -> Bonsai.Shaders.Delay(DueTime=PT0.2S) => #24
    #8 -> Condition ON => #25
        WorkflowInput Source1
        -> WorkflowOutput
    #24, #25 -> Merge
    -> Bonsai.Shaders.Delay(DueTime=PT0.2S)
    -> Condition Opto_ON
        SubscribeSubject Opto_ON
        -> Disable SubscribeSubject Opto
        -> WorkflowOutput
    -> BooleanProperty(Value=true)
    -> MulticastSubject Subscribe_Mega
    -> Bonsai.Shaders.Delay(DueTime=PT0.2S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject Start_Protocol
    -> WorkflowOutput

GroupWorkflow CameraStreaming
    Bonsai.Osc.CreateTcpServer(Name=Emitter, Port=1234, NoDelay=false, AllowNatTraversal=false)

    SubscribeSubject Video_File_Name
    -> PropertyMapping(FileName) => #2
    Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="") => #3
    SubscribeSubject Video_Timestamps_File_Name
    -> PropertyMapping(FileName) => #5
    SubscribeSubject Exp_End
    -> Condition => #7
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject Subscribe_Camera
    -> Condition => #9
        WorkflowInput Source1
        -> WorkflowOutput
    #3, #9 -> SubscribeWhen
    -> Retry => #11
    #11, #2 -> Bonsai.Vision.VideoWriter => #12
      FileName=../Data/TEST/SOUND_CAT_CONT_TEST_2023_8_9/Video_data.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=true
      FourCC=FMP4
      FrameRate=60
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    #12, #7 -> TakeUntil
    -> WorkflowOutput
    #11 -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #16
    #16, #5 -> Bonsai.IO.TextWriter(FileName=../Data/TEST/SOUND_CAT_CONT_TEST_2023_8_9/Video_timestamps.txt, Suffix=Timestamp, Buffered=true, Overwrite=false, Append=false)
    #11 -> Bonsai.Dsp.ConvertToArray(Depth=nil)
    -> Bonsai.Osc.SendMessage(Connection=Emitter, Address=/tcpimage)

GroupWorkflow Params
    Bonsai.IO.CsvReader(FileName=..\Params\Rig_Params.csv, ListSeparator="", SkipRows=0)
    -> ReplaySubject Rig_Params(BufferSize=nil)

    Bonsai.IO.CsvReader(FileName=..\Params\Subject_Params.csv, SkipRows=0)
    -> ReplaySubject Subject_Params(BufferSize=nil)

    SubscribeSubject Rig_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Room_ID
      Script:
        @returns(int)
        def process(value):
          len_output = 3
          param_spacing = 2
          param = 'Room_ID'
          start = value.find(param) + len(param) + param_spacing
          end = start + len_output
          return(int(value[start:end]))
    -> PropertyMapping(Room_ID) => #6
    SubscribeSubject Rig_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Rig_ID
      Script:
        @returns(int)
        def process(value):
          len_output = 2
          param_spacing = 2
          param = 'Rig_ID'
          start = value.find(param) + len(param) + param_spacing
          end = start + len_output
          return(int(value[start:end]))
    -> PropertyMapping(Rig_ID) => #9
    SubscribeSubject Rig_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Left_Valve
      Script:
        @returns(int)
        def process(value):
          len_output = 2
          param_spacing = 2
          param = 'Left_Valve_Time'
          start = value.find(param) + len(param) + param_spacing
          end = start + len_output
          return(int(value[start:end]))
    -> PropertyMapping("LeftValveTime (ms)") => #12
    SubscribeSubject Rig_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Right_Valve
      Script:
        @returns(int)
        def process(value):
          len_output = 2
          param_spacing = 2
          param = 'Right_Valve_Time'
          start = value.find(param) + len(param) + param_spacing
          end = start + len_output
          return(int(value[start:end]))
    -> PropertyMapping("RightValveTime (ms)") => #15
    #6, #9, #12, #15 -> GroupWorkflow Rig_Params
        ExternalizedMapping(Value(DisplayName="RightValveTime (ms)"))
        -> FloatProperty(Value=40)
        -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds
          Expression: TimeSpan.FromMilliseconds(it)
        -> BehaviorSubject RightValveTime

        ExternalizedMapping(Value(DisplayName="LeftValveTime (ms)"))
        -> FloatProperty(Value=40)
        -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds
          Expression: TimeSpan.FromMilliseconds(it)
        -> BehaviorSubject LeftValveTime

        ExternalizedMapping(Value(DisplayName=Room_ID))
        -> IntProperty(Value=404)
        -> BehaviorSubject Room_ID

        ExternalizedMapping(Value(DisplayName=Rig_ID))
        -> IntProperty(Value=40)
        -> BehaviorSubject Rig_ID

    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Stim_Dur
      Script:
        param = 'Stim_Dur'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> PropertyMapping("Stim_Dur (ms)") => #19
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Stim_Type
      Script:
        param = 'Stim_Type'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> PropertyMapping(Stim_Type) => #22
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Distribution
      Script:
        param = 'Distribution'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> PropertyMapping(Distribution) => #25
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform AntiBias => #27
      Script:
        param = 'AntiBias'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> Equal(Operand=StringProperty(Value=True))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #30
    #27 -> Equal(Operand=StringProperty(Value=False))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #33
    #30, #33 -> Merge
    -> PropertyMapping(Anti_Bias) => #35
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Speaker-Calib => #37
      Script:
        param = 'Speaker_Calib'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> Equal(Operand=StringProperty(Value=True))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #40
    #37 -> Equal(Operand=StringProperty(Value=False))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #43
    #40, #43 -> Merge
    -> PropertyMapping(Speaker_Calib) => #45
    #22, #25, #35, #45, #19 -> GroupWorkflow Task_Params
        ExternalizedMapping(Value(DisplayName="ITI (s)"))
        -> FloatProperty(Value=2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromSeconds
          Expression: TimeSpan.FromSeconds(it)
        -> BehaviorSubject ITI => #3
        SubscribeSubject Start_Protocol
        -> Condition => #5
            WorkflowInput Source1
            -> WorkflowOutput
        #3, #5 -> SubscribeWhen

        ExternalizedMapping(Value(DisplayName=Distribution))
        -> StringProperty(Value=Asym_Right)
        -> BehaviorSubject Distribution

        ExternalizedMapping(Value(DisplayName=Anti_Bias))
        -> BooleanProperty(Value=false)
        -> BehaviorSubject Anti_Bias

        ExternalizedMapping(Value(DisplayName=Stim_Type))
        -> StringProperty(Value=PT)
        -> BehaviorSubject Stim_Type

        ExternalizedMapping(Value(DisplayName="Stim_Dur (ms)"))
        -> FloatProperty(Value=50)
        -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds
          Expression: TimeSpan.FromMilliseconds(it)
        -> BehaviorSubject Stim_Dur

        ExternalizedMapping(Value(DisplayName="GoCueDur (ms)"))
        -> FloatProperty(Value=300)
        -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds
          Expression: TimeSpan.FromMilliseconds(it)
        -> BehaviorSubject GoCueDur

        ExternalizedMapping(Value(DisplayName="ResponseWindow (s)"))
        -> FloatProperty(Value=3)
        -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromSeconds
          Expression: TimeSpan.FromSeconds(it)
        -> BehaviorSubject ResponseWindow

        ExternalizedMapping(Value(DisplayName=Visualizer_Window_Size))
        -> IntProperty(Value=30)
        -> BehaviorSubject Visualizer_Window_Size

        ExternalizedMapping(Value(DisplayName="TimeoutDuration (s)"))
        -> FloatProperty(Value=3)
        -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromSeconds
          Expression: TimeSpan.FromSeconds(it)
        -> BehaviorSubject TimeoutDuration

        Bonsai.IO.CsvReader(FileName=..\Params\Rig_Params.csv, SkipRows=0) => #35
        -> Bonsai.Scripting.IronPython.PythonTransform Y_Intercept
          Script:
            param = 'Speaker_Y_Intercept'
            param_type = float
            @returns(param_type)
            def process(value):
              param_start = value.find(param + ": ") + len(param + ": ")
              param_end = value.find(",", param_start)
              return(param_type(value[param_start:param_end]))
        -> BehaviorSubject Speaker_Y_Incercept
        #35 -> Bonsai.Scripting.IronPython.PythonTransform Slope
          Script:
            param = 'Speaker_Slope'
            param_type = float
            @returns(param_type)
            def process(value):
              param_start = value.find(param + ": ") + len(param + ": ")
              param_end = value.find(",", param_start)
              return(param_type(value[param_start:param_end]))
        -> BehaviorSubject Speaker_Slope

        ExternalizedMapping(Value(DisplayName=Speaker_Calib))
        -> BooleanProperty(Value=false)
        -> BehaviorSubject Speaker_Calib

        ExternalizedMapping(Value(DisplayName=Dist_Exp_Rate))
        -> FloatProperty(Value=2.15329)
        -> BehaviorSubject Dist_Exp_Rate

        SubscribeSubject Stim_Type => #46
        -> Condition PT => #47
            WorkflowInput Source1
            -> Equal(Operand=StringProperty(Value=PT))
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=PT_Boundary)) => #48
        #47, #48 -> FloatProperty(Value=8) => #49
        #46 -> Condition WN => #50
            WorkflowInput Source1
            -> Equal(Operand=StringProperty(Value=WN))
            -> WorkflowOutput
        -> Condition No_Calib => #51
            SubscribeSubject Speaker_Calib
            -> BitwiseNot
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=WN_No_Calib_Boundary)) => #52
        #51, #52 -> FloatProperty(Value=76) => #53
        #50 -> Condition Calib => #54
            SubscribeSubject Speaker_Calib
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=WN_Calib_Boundary)) => #55
        #54, #55 -> FloatProperty(Value=66) => #56
        #49, #53, #56 -> Merge
        -> BehaviorSubject Boundary

    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Protocol
      Script:
        param = 'Protocol'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> PropertyMapping(Exp_Name) => #49
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Subject_ID
      Script:
        param = 'Subject'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> PropertyMapping(Animal_ID) => #52
    #49, #52 -> GroupWorkflow Control_Params
        ExternalizedMapping(Value(DisplayName=Data_Path))
        -> StringProperty(Value=../Data) => #1
        ExternalizedMapping(Value(DisplayName=Exp_Name))
        -> StringProperty(Value=SOUND_CAT_CONT) => #3
        ExternalizedMapping(Value(DisplayName=Animal_ID))
        -> StringProperty(Value=TEST)
        -> BehaviorSubject Animal_ID => #6
        IntProperty(Value=0)
        -> Timestamp => #8
        -> MemberSelector(Selector=Timestamp.DateTime.Year) => #9
        #8 -> MemberSelector(Selector=Timestamp.DateTime.Month) => #10
        #8 -> MemberSelector(Selector=Timestamp.Date.Day) => #11
        #9, #10, #11 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1.toString() + "_" + Item2.toString() + "_" + Item3.toString() as date
            )
        -> MemberSelector(Selector=date) => #14
        #1, #3, #6, #14 -> Zip => #15
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Trial_Summary.csv" as Trial_Summary_File_Name
            )
        -> MemberSelector(Selector=Trial_Summary_File_Name)
        -> BehaviorSubject Trial_File_Name => #18
        #15 -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Detected_Licks.csv" as Licks_File_Name
            )
        -> MemberSelector(Selector=Licks_File_Name)
        -> BehaviorSubject Licks_File_Name => #21
        #15 -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Video_data.avi" as Video_File_Name
            )
        -> MemberSelector(Selector=Video_File_Name)
        -> BehaviorSubject Video_File_Name => #24
        #15 -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Video_timestamps.txt" as Video_Timestamps_File_Name
            )
        -> MemberSelector(Selector=Video_Timestamps_File_Name)
        -> BehaviorSubject Video_Timestamps_File_Name => #27
        #15 -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Optostim_Data.txt" as Optostim_Data_File_Name
            )
        -> MemberSelector(Selector=Optostim_Data_File_Name)
        -> BehaviorSubject Optostim_Data_File_Name => #30
        #18, #21, #24, #27, #30 -> Merge => #31
        SubscribeSubject Subscribe_Control_Params
        -> Condition => #33
            WorkflowInput Source1
            -> WorkflowOutput
        #31, #33 -> SubscribeWhen

    SubscribeSubject Rig_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Beh
      Script:
        @returns(str)
        def process(value):
          len_output = 4
          param_spacing = 2
          param = 'Harp_Beh_Port'
          start = value.find(param) + len(param) + param_spacing
          end = start + len_output
          return(value[start:end])
    -> PropertyMapping(HARP_Port) => #56
    SubscribeSubject Rig_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Arduino_Port
      Script:
        param = 'Arduino_Port'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> PropertyMapping(Nano_Port) => #59
    SubscribeSubject Rig_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Sound_Card
      Script:
        @returns(str)
        def process(value):
          len_output = 4
          param_spacing = 2
          param = 'Sound_Card_Port'
          start = value.find(param) + len(param) + param_spacing
          end = start + len_output
          return(value[start:end])
    -> PropertyMapping(PortName) => #62
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Emulator => #64
      Script:
        param = 'Emulator'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> Equal(Operand=StringProperty(Value=True))
    -> Condition => #66
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #67
    #66 -> BooleanProperty(Value=false) => #68
    #64 -> Equal(Operand=StringProperty(Value=False))
    -> Condition => #70
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #71
    #67, #71 -> Merge
    -> PropertyMapping(Emulate) => #73
    #70 -> BooleanProperty(Value=true) => #74
    #68, #74 -> Merge
    -> PropertyMapping(Soundcard?) => #76
    #62, #76 -> GroupWorkflow HarpSoundCard
        ExternalizedMapping(PortName) => #0
        SubscribeSubject Stim_Relative => #1
        -> Condition WN => #2
            SubscribeSubject Stim_Type => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=WN))
            -> WorkflowOutput
        -> Condition Speaker_Calib
            SubscribeSubject Speaker_Calib
            -> WorkflowOutput
        -> SelectMany Calib_Mapping
            WorkflowInput Source1
            -> Add(Operand=FloatProperty(Value=1))
            -> Multiply(Operand=FloatProperty(Value=32))
            -> Divide(Operand=FloatProperty(Value=2))
            -> Add(Operand=FloatProperty(Value=50))
            -> MulticastSubject WN_Amp
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany Convert_To_Bonsai_Amp => #5
            SubscribeSubject Speaker_Y_Incercept => #0
            SubscribeSubject Speaker_Slope
            -> PropertyMapping(Value) => #2
            SubscribeSubject WN_Amp => #3
            #3, #0 -> Zip
            -> Subtract => #5
            #5, #2 -> Divide(Operand=DoubleProperty(Value=1.3840476180425894))
            -> Take(Count=1)
            -> WorkflowOutput
        #2 -> Condition No_Speaker_Calib
            SubscribeSubject Speaker_Calib
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany No_Calib_Mapping
            WorkflowInput Source1
            -> Add(Operand=FloatProperty(Value=1))
            -> Multiply(Operand=FloatProperty(Value=32))
            -> Divide(Operand=FloatProperty(Value=2))
            -> Add(Operand=FloatProperty(Value=60))
            -> MulticastSubject WN_Amp
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany Fire_Raw_Amp => #8
            SubscribeSubject WN_Amp
            -> PropertyMapping(Value)
            -> DoubleProperty(Value=71.509574890136719)
            -> Take(Count=1)
            -> WorkflowOutput
        #5, #8 -> Merge
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: (it-107.54)/-0.0764
        -> PropertyMapping(Value)
        -> IntProperty(Value=471) => #12
        -> SelectMany Left => #13
            WorkflowInput Source1
            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
            -> WorkflowOutput
        #12 -> SelectMany Right => #14
            WorkflowInput Source1
            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
            -> WorkflowOutput
        #13, #14 -> Zip
        -> SelectMany Play_WN => #16
            IntProperty(Value=3)
            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U16, Payload=0) => #1
            -> Take(Count=1)
            -> WorkflowOutput
            #1 -> SelectMany Fire_Stim_Relative => #4
                SubscribeSubject Stim_Relative
                -> Bonsai.Scripting.IronPython.PythonTransform Float_To_Str
                  Script:
                    @returns(str)
                    def process(value):
                        return str(value)
                -> WorkflowOutput
            StringProperty(Value=Sound_Rel_Start) => #5
            #4, #5 -> CombineLatest
            -> MulticastSubject Event_Log
        SubscribeSubject Stim_Dur
        -> PropertyMapping(DueTime) => #18
        SubscribeSubject Subscribe_Soundcard
        -> Condition => #20
            WorkflowInput Source1
            -> WorkflowOutput
        SubscribeSubject Stim_Dur
        -> PropertyMapping(DueTime) => #22
        #16, #22 -> Delay(DueTime=PT0.05S)
        -> SelectMany Stop_WN => #24
            IntProperty(Value=30)
            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U16, Payload=0) => #1
            -> Take(Count=1)
            -> WorkflowOutput
            #1 -> SelectMany Fire_Stim_Relative => #4
                SubscribeSubject Stim_Relative
                -> Bonsai.Scripting.IronPython.PythonTransform Float_To_Str
                  Script:
                    @returns(str)
                    def process(value):
                        return str(value)
                -> WorkflowOutput
            StringProperty(Value=Sound_Rel_End) => #5
            #4, #5 -> CombineLatest
            -> MulticastSubject Event_Log
        #13, #14, #24, #16 -> Merge
        -> Skip(Count=3) => #26
        #1 -> Condition PT => #27
            SubscribeSubject Stim_Type => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=PT))
            -> WorkflowOutput
        -> SelectMany Map_Freq
            WorkflowInput Source1
            -> Add(Operand=FloatProperty(Value=1)) => #1
            ExternalizedMapping(Value(DisplayName=Ref_Octave))
            -> FloatProperty(Value=0)
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(float)
                def process(value):
                  import math
                  reference_freq = 4000
                  return math.log((2**value) * reference_freq)/math.log(2)
            -> PropertyMapping(Value) => #5
            #1, #5 -> Add(Operand=FloatProperty(Value=11.9657841))
            -> WorkflowOutput
        -> Sink Map_Tone
            WorkflowInput Source1
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(float)
                def process(value):
                  result =  (2**value) / 1000
                  return result
            -> MulticastSubject Tone
            -> WorkflowOutput
        -> Skip(Count=1)
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            @returns(float)
            def process(value):
              return 2**value
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: uint16(it)
        -> Bonsai.Harp.Format(MessageType=Write, Address=32, PayloadType=U16) => #33
        #18, #27 -> Delay(DueTime=PT0.05S)
        -> IntProperty(Value=3)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: byte(it)
        -> Bonsai.Harp.Format(MessageType=Write, Address=33, PayloadType=U8) => #37
        #27 -> IntProperty(Value=229) => #38
        -> SelectMany Left => #39
            WorkflowInput Source1
            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
            -> WorkflowOutput
        #38 -> SelectMany Right => #40
            WorkflowInput Source1
            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
            -> WorkflowOutput
        #33, #37, #39, #40 -> Merge => #41
        #26, #41 -> Merge => #42
        #42, #0 -> Bonsai.Harp.Device(PortName=COM8, DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false) => #43
        #43, #20 -> SubscribeWhen
        #42 -> Timestamp
        -> BehaviorSubject Emulator_Vis

        IntProperty(Value=0)
        -> BehaviorSubject SoundIndex

        ExternalizedMapping(Value(DisplayName=Soundcard?))
        -> BooleanProperty(Value=false)
        -> BehaviorSubject Soundcard?

        FloatProperty(Value=11.5)
        -> BehaviorSubject Freq

        IntProperty(Value=80)
        -> BehaviorSubject Volume

        IntProperty(Value=3)
        -> BehaviorSubject StopSound
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Arduino => #79
      Script:
        param = 'Arduino'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> Equal(Operand=StringProperty(Value=True))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #82
    #79 -> Equal(Operand=StringProperty(Value=False))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #85
    #82, #85 -> Merge
    -> PropertyMapping(Arduino) => #87
    #73, #87, #56, #59 -> GroupWorkflow HarpBeh
      Description:
        Workflows to connect and interact with Harp Behaviour Module

        Will initialise device and create subjects:

        BehModuleInput -- Messagebytes -- output from devicecommand node to issue outputs to harp board

        BehBytes -- bytesarray -- messagebytes output to be written to .bin file with MatrixWriter node

        BeamXbool -- bool -- readout  for hi/lo state of photogate/lickspout connected to ethernet breakout ports
      Workflow
        ExternalizedMapping(Value(DisplayName=Emulate))
        -> BooleanProperty(Value=true)
        -> BehaviorSubject Emulator

        ExternalizedMapping(Value(DisplayName=Arduino))
        -> BooleanProperty(Value=false)
        -> BehaviorSubject Arduino

        BooleanProperty(Value=false) => #6
        -> BehaviorSubject Left_Valve
        #6 -> BehaviorSubject Right_Valve
        #6 -> BehaviorSubject Beam1Bool
        #6 -> BehaviorSubject Beam2Bool

        SubscribeSubject Left_Valve => #11
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve) => #13
        #11 -> Condition => #14
            WorkflowInput Source1
            -> WorkflowOutput
        -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke1Valve) => #15
        SubscribeSubject Right_Valve => #16
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve) => #18
        #16 -> Condition => #19
            WorkflowInput Source1
            -> WorkflowOutput
        -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve) => #20
        #13, #15, #18, #20 -> Merge
        -> MulticastSubject BehModule
        #14 -> Bonsai.Scripting.Expressions.ExpressionTransform C => #23
          Expression: 'C'
        #19 -> Bonsai.Scripting.Expressions.ExpressionTransform A => #24
          Expression: 'A'
        #23, #24 -> Merge
        -> MulticastSubject Arduino_Command
        #14 -> Disable Bonsai.Scripting.IronPython.PythonTransform To_Str => #27
          Script:
            @returns(str)
            def process(value):
                return str(value)
        #19 -> Disable Bonsai.Scripting.IronPython.PythonTransform To_Str => #28
          Script:
            @returns(str)
            def process(value):
                return str(value)
        Disable StringProperty(Value=Left_Valve) => #29
        #27, #29 -> Disable CombineLatest
        -> Disable MulticastSubject Event_Log
        Disable StringProperty(Value=Right_Valve) => #32
        #28, #32 -> Disable CombineLatest
        -> Disable MulticastSubject Event_Log

        ExternalizedMapping(PortName(DisplayName=HARP_Port))
        -> GroupWorkflow HARP
            BooleanProperty(Value=false)
            -> Bonsai.Harp.Format(MessageType=Write, Address=32, PayloadType=U8)
            -> BehaviorSubject BehModule

            SubscribeSubject BehModule
            -> Skip(Count=1) => #4
            ExternalizedMapping(PortName) => #5
            #4, #5 -> GroupWorkflow Device_Emulator
                WorkflowInput Source1 => #0
                ExternalizedMapping(PortName) => #1
                #0, #1 -> Bonsai.Harp.Device(PortName="NaN,", DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false) => #2
                SubscribeSubject Subscribe_Behaviour
                -> Condition => #4
                    WorkflowInput Source1
                    -> WorkflowOutput
                #2, #4 -> SubscribeWhen => #5
                -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port0) => #6
                SubscribeSubject Emulator => #7
                -> PropertyMapping(Emulate)
                -> GroupWorkflow Poke_0_Emulator => #9
                    ExternalizedMapping(Value(DisplayName=Emulate))
                    -> BooleanProperty(Value=true) => #1
                    ExternalizedMapping(Value(DisplayName=Filter))
                    -> PropertySource<Bonsai.Windows.Input.KeyDown,System.Windows.Forms.Keys>(MemberName=Filter, Value=D0) => #3
                    -> PropertyMapping(Filter) => #4
                    ExternalizedMapping(SuppressRepetitions) => #5
                    #4, #5 -> Bonsai.Windows.Input.KeyDown(Filter=D0, SuppressRepetitions=true)
                    -> BooleanProperty(Value=false) => #7
                    #3 -> PropertyMapping(Filter)
                    -> Bonsai.Windows.Input.KeyUp(Filter=D0)
                    -> BooleanProperty(Value=true) => #10
                    #10, #7 -> Merge => #11
                    #11, #1 -> SubscribeWhen
                    -> WorkflowOutput
                #6, #9 -> Merge
                -> Disable MulticastSubject Beam0Bool
                #5 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port1) => #12
                #7 -> PropertyMapping(Emulate)
                -> GroupWorkflow Poke_1_Emulator => #14
                    ExternalizedMapping(Value(DisplayName=Emulate))
                    -> BooleanProperty(Value=true) => #1
                    ExternalizedMapping(Value(DisplayName=Filter))
                    -> PropertySource<Bonsai.Windows.Input.KeyDown,System.Windows.Forms.Keys>(MemberName=Filter, Value=D1) => #3
                    -> PropertyMapping(Filter) => #4
                    ExternalizedMapping(SuppressRepetitions) => #5
                    #4, #5 -> Bonsai.Windows.Input.KeyDown(Filter=D1, SuppressRepetitions=true)
                    -> BooleanProperty(Value=false) => #7
                    #3 -> PropertyMapping(Filter)
                    -> Bonsai.Windows.Input.KeyUp(Filter=D1)
                    -> BooleanProperty(Value=true) => #10
                    #10, #7 -> Merge => #11
                    #11, #1 -> SubscribeWhen
                    -> WorkflowOutput
                #12, #14 -> Merge
                -> MulticastSubject Beam1Bool
                #5 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port2) => #17
                #7 -> PropertyMapping(Emulate)
                -> GroupWorkflow Poke_2_Emulator => #19
                    ExternalizedMapping(Value(DisplayName=Emulate))
                    -> BooleanProperty(Value=true) => #1
                    ExternalizedMapping(Value(DisplayName=Filter))
                    -> PropertySource<Bonsai.Windows.Input.KeyDown,System.Windows.Forms.Keys>(MemberName=Filter, Value=D2) => #3
                    -> PropertyMapping(Filter) => #4
                    ExternalizedMapping(SuppressRepetitions) => #5
                    #4, #5 -> Bonsai.Windows.Input.KeyDown(Filter=D2, SuppressRepetitions=true)
                    -> BooleanProperty(Value=false) => #7
                    #3 -> PropertyMapping(Filter)
                    -> Bonsai.Windows.Input.KeyUp(Filter=D2)
                    -> BooleanProperty(Value=true) => #10
                    #10, #7 -> Merge => #11
                    #11, #1 -> SubscribeWhen
                    -> WorkflowOutput
                #17, #19 -> Merge
                -> MulticastSubject Beam2Bool

        ExternalizedMapping(Nano_Port)
        -> GroupWorkflow Ardunio
            Bonsai.IO.SerialStringRead(PortName=ArduinoNano, NewLine=\n)
            -> BufferCount(Count=3, Skip=nil)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                it[0] as ID,
                Convert.ToInt32(it[1]) == 1 as State,
                Convert.ToSingle(it[2]) as time
                )
            -> Disable Bonsai.Shaders.DelaySubscription(DueTime=PT1S) => #3
            SubscribeSubject Emulator
            -> BooleanProperty(Value=true) => #5
            -> PropertyMapping(Emulate)
            -> GroupWorkflow Poke_1_Emulator => #7
                ExternalizedMapping(Value(DisplayName=Emulate))
                -> BooleanProperty(Value=true) => #1
                ExternalizedMapping(Value(DisplayName=Filter))
                -> PropertySource<Bonsai.Windows.Input.KeyDown,System.Windows.Forms.Keys>(MemberName=Filter, Value=D1) => #3
                -> PropertyMapping(Filter) => #4
                ExternalizedMapping(SuppressRepetitions) => #5
                #4, #5 -> Bonsai.Windows.Input.KeyDown(Filter=D1, SuppressRepetitions=true)
                -> BooleanProperty(Value=false) => #7
                #3 -> PropertyMapping(Filter)
                -> Bonsai.Windows.Input.KeyUp(Filter=D1)
                -> BooleanProperty(Value=true) => #10
                #10, #7 -> Merge => #11
                #11, #1 -> SubscribeWhen
                -> WorkflowOutput
            #5 -> PropertyMapping(Emulate)
            -> GroupWorkflow Poke_2_Emulator => #9
                ExternalizedMapping(Value(DisplayName=Emulate))
                -> BooleanProperty(Value=true) => #1
                ExternalizedMapping(Value(DisplayName=Filter))
                -> PropertySource<Bonsai.Windows.Input.KeyDown,System.Windows.Forms.Keys>(MemberName=Filter, Value=D2) => #3
                -> PropertyMapping(Filter) => #4
                ExternalizedMapping(SuppressRepetitions) => #5
                #4, #5 -> Bonsai.Windows.Input.KeyDown(Filter=D2, SuppressRepetitions=true)
                -> BooleanProperty(Value=false) => #7
                #3 -> PropertyMapping(Filter)
                -> Bonsai.Windows.Input.KeyUp(Filter=D2)
                -> BooleanProperty(Value=true) => #10
                #10, #7 -> Merge => #11
                #11, #1 -> SubscribeWhen
                -> WorkflowOutput
            SubscribeSubject Arduino_Command
            -> Bonsai.IO.SerialStringWrite(PortName=ArduinoNano, NewLine=\n)
            -> Disable Bonsai.Shaders.DelaySubscription(DueTime=PT1S) => #12
            SubscribeSubject Subscribe_Nano
            -> Condition => #14
                WorkflowInput Source1
                -> WorkflowOutput
            ExternalizedMapping(PortName(DisplayName=Nano_Port))
            -> Bonsai.IO.CreateSerialPort
              Name=ArduinoNano
              PortName=NaN
              BaudRate=9600
              Encoding=us-ascii
              Parity=None
              ParityReplace=63
              DataBits=8
              StopBits=One
              Handshake=None
              DiscardNull=false
              DtrEnable=true
              RtsEnable=false
              ReadBufferSize=4096
              WriteBufferSize=2048
              ReceivedBytesThreshold=1
            -> Disable Bonsai.Shaders.DelaySubscription(DueTime=PT1S) => #17
            #17, #14 -> SubscribeWhen
            #3, #14 -> SubscribeWhen => #19
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=ID)
                -> Bonsai.Scripting.IronPython.PythonTransform
                  Script:
                    @returns(bool)
                    def process(value):
                      return "Left input" in value
                -> WorkflowOutput
            -> MemberSelector(Selector=State) => #21
            #21, #7 -> Merge
            -> MulticastSubject Beam1Bool
            #19 -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=ID)
                -> Bonsai.Scripting.IronPython.PythonTransform
                  Script:
                    @returns(bool)
                    def process(value):
                      return "Right input" in value
                -> WorkflowOutput
            -> MemberSelector(Selector=State) => #25
            #25, #9 -> Merge
            -> MulticastSubject Beam2Bool
            #12, #14 -> SubscribeWhen

            IntProperty(Value=0)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: 'T'
            -> BehaviorSubject Arduino_Command

        Disable SubscribeSubject Beam1Bool
        -> Disable Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Disable StringProperty(Value=Left) => #41
        Disable SubscribeSubject Beam2Bool
        -> Disable Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Disable StringProperty(Value=Right) => #44
        #41, #44 -> Disable Merge => #45
        Disable StringProperty(Value=First_Lick) => #46
        #45, #46 -> Disable CombineLatest
        -> Disable MulticastSubject Event_Log

    SubscribeSubject Rig_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Arduino_Mega_Port
      Script:
        param = 'Arduino_Mega_Port'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> PropertyMapping(Arduino_Mega_Port)
    -> GroupWorkflow Opto_Stim
      Description:
        Takes n trials back and calculates the difference between what the mouse should've done Vs what it actually did
        Weigh this difference vector by an exponential kernel, then pass through a sigmoid function to generate P(Right)

        FirstLick --> Choice (here 1 for left, 0 for right)
        Tone/WN_Amp --> Stimulus, dictates where the mouse should lick (here 1 for left, 0 for right)

        Defailt params:
        - ant_bias_window = 30
        - exp_rate = 1
        - sigmoid_slope_0 = 2
      Workflow
        SubscribeSubject Subject_Params
        -> Bonsai.Scripting.IronPython.PythonTransform Opto_ON => #1
          Script:
            param = 'Opto_ON'
            param_type = str
            @returns(param_type)
            def process(value):
              param_start = value.find(param + ": ") + len(param + ": ")
              param_end = value.find(",", param_start)
              return(param_type(value[param_start:param_end]))
        -> Equal(Operand=StringProperty(Value=True))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #4
        #1 -> Equal(Operand=StringProperty(Value=False))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #7
        #4, #7 -> Merge
        -> PropertyMapping(Value)
        -> BooleanProperty(Value=false)
        -> BehaviorSubject Opto_ON

        SubscribeSubject Subject_Params
        -> Bonsai.Scripting.IronPython.PythonTransform Perc_Opto_Trials
          Script:
            param = 'Perc_Opto_Trials'
            param_type = float
            @returns(param_type)
            def process(value):
              param_start = value.find(param + ": ") + len(param + ": ")
              param_end = value.find(",", param_start)
              return(param_type(value[param_start:param_end]))
        -> PropertyMapping(Value)
        -> FloatProperty(Value=NaN)
        -> BehaviorSubject Perc_Opto_Trials

        SubscribeSubject Subject_Params
        -> Bonsai.Scripting.IronPython.PythonTransform "Light_Freq (Hz)"
          Script:
            param = 'Light_Freq (Hz)'
            param_type = float
            @returns(param_type)
            def process(value):
              param_start = value.find(param + ": ") + len(param + ": ")
              param_end = value.find(",", param_start)
              return(param_type(value[param_start:param_end]))
        -> PropertyMapping(Value)
        -> FloatProperty(Value=NaN)
        -> BehaviorSubject "Light_Freq (Hz)"

        SubscribeSubject Subject_Params
        -> Bonsai.Scripting.IronPython.PythonTransform Opto_Offset
          Script:
            param = 'Opto_Offset'
            param_type = str
            @returns(param_type)
            def process(value):
              param_start = value.find(param + ": ") + len(param + ": ")
              param_end = value.find(",", param_start)
              return(param_type(value[param_start:param_end]))
        -> PropertyMapping(Value)
        -> StringProperty(Value=nan)
        -> BehaviorSubject Opto_Offset

        SubscribeSubject Subject_Params
        -> Bonsai.Scripting.IronPython.PythonTransform Opto_Onset
          Script:
            param = 'Opto_Onset'
            param_type = str
            @returns(param_type)
            def process(value):
              param_start = value.find(param + ": ") + len(param + ": ")
              param_end = value.find(",", param_start)
              return(param_type(value[param_start:param_end]))
        -> PropertyMapping(Value)
        -> StringProperty(Value=nan)
        -> BehaviorSubject Opto_Onset

        SubscribeSubject Subject_Params
        -> Bonsai.Scripting.IronPython.PythonTransform Stimulation_Type
          Script:
            param = 'Stimulation_Type'
            param_type = str
            @returns(param_type)
            def process(value):
              param_start = value.find(param + ": ") + len(param + ": ")
              param_end = value.find(",", param_start)
              return(param_type(value[param_start:param_end]))
        -> PropertyMapping(Value)
        -> StringProperty(Value=nan)
        -> BehaviorSubject Stimulation_Type

        SubscribeSubject Subject_Params
        -> Bonsai.Scripting.IronPython.PythonTransform Stimulation_Site
          Script:
            param = 'Stimulation_Site'
            param_type = str
            @returns(param_type)
            def process(value):
              param_start = value.find(param + ": ") + len(param + ": ")
              param_end = value.find(",", param_start)
              return(param_type(value[param_start:param_end]))
        -> PropertyMapping(Value)
        -> StringProperty(Value=nan)
        -> BehaviorSubject Stimulation_Site

        BooleanProperty(Value=false) => #42
        -> BehaviorSubject Fiber
        #42 -> BehaviorSubject Mask

        SubscribeSubject Opto_Onset => #45
        SubscribeSubject Trial_Epoch => #46
        #45, #46 -> CombineLatest
        -> Equal
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Skip(Count=1)
        -> Condition "Opto_ON ?" => #51
            SubscribeSubject Opto_ON
            -> WorkflowOutput
        -> SelectMany Fiber(Description="Should be x% of trials during opto sessions")
            Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
            -> Bonsai.Numerics.Distributions.Sample => #1
            SubscribeSubject Perc_Opto_Trials
            -> Divide(Operand=FloatProperty(Value=100)) => #3
            #1, #3 -> Zip => #4
            -> Condition
                WorkflowInput Source1
                -> GreaterThan
                -> WorkflowOutput
            -> SelectMany Nothing => #6
                WorkflowInput Source1
                -> BooleanProperty(Value=false)
                -> MulticastSubject Fiber
                -> WorkflowOutput
            #4 -> Condition
                WorkflowInput Source1
                -> LessThanOrEqual
                -> WorkflowOutput
            -> SelectMany Fiber_ON => #8
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform Fiber_ON
                  Expression: 'f'
                -> MulticastSubject Arduino_Mega_Command
                -> BooleanProperty(Value=true)
                -> MulticastSubject Fiber
                -> WorkflowOutput
            #6, #8 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany "Offset ?"
            SubscribeSubject Opto_Offset => #0
            SubscribeSubject Trial_Epoch => #1
            #0, #1 -> CombineLatest
            -> Equal
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany Stop_Fiber => #54
            SubscribeSubject Fiber => #0
            -> Condition If_ON
                WorkflowInput Source1
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform Ramp_Down_Fiber => #2
              Expression: 'r'
            #0 -> Condition If_OFF
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform Nothing => #4
              Expression: 's'
            #2, #4 -> Merge
            -> MulticastSubject Arduino_Mega_Command
            -> Take(Count=1)
            -> WorkflowOutput
        #51 -> SelectMany Mask(Description="Should be 100% of trials during opto sessions")
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform Mask_ON
              Expression: 'm'
            -> MulticastSubject Arduino_Mega_Command
            -> BooleanProperty(Value=true)
            -> MulticastSubject Mask
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany "Offset ?"
            SubscribeSubject Opto_Offset => #0
            SubscribeSubject Trial_Epoch => #1
            #0, #1 -> CombineLatest
            -> Equal
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany Stop_Mask => #57
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform Ramp_Down_Mask
              Expression: 't'
            -> MulticastSubject Arduino_Mega_Command
            -> Take(Count=1)
            -> WorkflowOutput
        #54, #57 -> Merge => #58
        SubscribeSubject Exp_End
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany End_Opto => #61
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.Expressions.ExpressionTransform Stop_Fiber
              Expression: 's'
            -> MulticastSubject Arduino_Mega_Command => #2
            #0 -> Bonsai.Scripting.Expressions.ExpressionTransform Stop_Mask
              Expression: 'k'
            -> MulticastSubject Arduino_Mega_Command => #4
            #2, #4 -> Merge
            -> Disable Take(Count=1)
            -> WorkflowOutput
        #58, #61 -> TakeUntil
        -> WorkflowOutput

        ExternalizedMapping(PortName(DisplayName=Arduino_Mega_Port))
        -> Bonsai.IO.CreateSerialPort => #65
          Name=ArduinoMega
          PortName=COM8
          BaudRate=9600
          Encoding=us-ascii
          Parity=None
          ParityReplace=63
          DataBits=8
          StopBits=One
          Handshake=None
          DiscardNull=false
          DtrEnable=true
          RtsEnable=false
          ReadBufferSize=4096
          WriteBufferSize=2048
          ReceivedBytesThreshold=1
        SubscribeSubject Arduino_Mega_Command
        -> Bonsai.IO.SerialStringWrite(PortName=ArduinoMega, NewLine=\n)
        -> Bonsai.Shaders.DelaySubscription(DueTime=PT1S) => #68
        SubscribeSubject Subscribe_Mega
        -> Condition => #70
            WorkflowInput Source1
            -> WorkflowOutput
        #65, #70 -> SubscribeWhen
        #68, #70 -> SubscribeWhen

        IntProperty(Value=0)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: 's'
        -> BehaviorSubject Arduino_Mega_Command

GroupWorkflow UDP_Client
    Bonsai.Osc.CreateUdpClient(Name=End_Signal, Port=1334, RemoteHostName="", RemotePort=0)

    Bonsai.Osc.ReceiveMessage(Address=/GUI, TypeTag=s, Connection=End_Signal)
    -> Equal(Operand=StringProperty(Value=End_Protocol))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true)
    -> MulticastSubject Exp_End

GroupWorkflow Long_Form_Timestamps
    SubscribeSubject Left_Valve
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Bonsai.Scripting.IronPython.PythonTransform To_Str => #2
      Script:
        @returns(str)
        def process(value):
            return str(value)
    StringProperty(Value=Left_Valve) => #3
    #2, #3 -> CombineLatest
    -> MulticastSubject Event_Log

    SubscribeSubject Right_Valve
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Bonsai.Scripting.IronPython.PythonTransform To_Str => #8
      Script:
        @returns(str)
        def process(value):
            return str(value)
    StringProperty(Value=Right_Valve) => #9
    #8, #9 -> CombineLatest
    -> MulticastSubject Event_Log

    SubscribeSubject FirstLick
    -> Bonsai.Scripting.IronPython.PythonTransform To_Str => #13
      Script:
        @returns(str)
        def process(value):
            return str(value)
    StringProperty(Value=First_Lick) => #14
    #13, #14 -> CombineLatest
    -> MulticastSubject Event_Log

SubscribeSubject ITI
-> PropertyMapping(DueTime)
-> Timer(DueTime=PT2S, Period=PT0S)
-> SelectMany PrepTrial
    WorkflowInput Source1
    -> Sink SetSpouts
        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject Beam1Bool

        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject Beam2Bool
    -> Sink CheckValvesClosed
        WorkflowInput Source1 => #0
        -> BooleanProperty(Value=false)
        -> MulticastSubject Left_Valve => #2
        #0 -> BooleanProperty(Value=false)
        -> MulticastSubject Right_Valve => #4
        #2, #4 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> Sink "TrialEnd = False"
        WorkflowInput Source1
        -> BooleanProperty(Value=false)
        -> MulticastSubject TrialEnd
        -> SelectMany Get_Trial_Number => #3
            SubscribeSubject TrialNumber
            -> Add(Operand=IntProperty(Value=1))
            -> Bonsai.Scripting.IronPython.PythonTransform Int_To_Str
              Script:
                @returns(str)
                def process(value):
                    return str(value)
            -> Take(Count=1)
            -> WorkflowOutput
        StringProperty(Value=Trial_Start) => #4
        #3, #4 -> CombineLatest
        -> MulticastSubject Event_Log
        -> WorkflowOutput
    -> Sink "Exp_End = False"
        WorkflowInput Source1
        -> BooleanProperty(Value=false)
        -> MulticastSubject Exp_End
        -> WorkflowOutput
    -> WorkflowOutput
-> SelectMany Trial
    WorkflowInput Source1
    -> SelectMany Stim
        SubscribeSubject Anti_Bias => #0
        -> Condition Off
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany No_Anti_Bias => #2
            SubscribeSubject Distribution => #0
            -> Condition Uniform?
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=StringProperty(Value=Uniform))
                -> WorkflowOutput
            -> SelectMany Unif => #2
                ExternalizedMapping(Lower, Upper)
                -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-1, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample
                -> WorkflowOutput
            #0 -> Condition Asym_Left?
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=StringProperty(Value=Asym_Left))
                -> WorkflowOutput
            -> SelectMany Coin_Flip => #4
                Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample
                -> WorkflowOutput
            -> Condition "> Boundary"
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> SelectMany Asym => #6
                Timer(DueTime=PT0S, Period=PT0.01S)
                -> SelectMany Exp => #1
                    SubscribeSubject Dist_Exp_Rate
                    -> PropertyMapping(Rate)
                    -> Bonsai.Numerics.Distributions.CreateExponential(Rate=2.15329)
                    -> Bonsai.Numerics.Distributions.Sample
                    -> Take(Count=1)
                    -> WorkflowOutput
                ExternalizedMapping(Upper) => #2
                #1, #2 -> Condition "<1 ?"
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=Upper)) => #1
                    #0, #1 -> LessThanOrEqual(Operand=DoubleProperty(Value=1))
                    -> WorkflowOutput
                -> Take(Count=1)
                -> WorkflowOutput
            #4 -> Condition "< Boundary"
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> SelectMany Unif => #8
                ExternalizedMapping(Lower, Upper)
                -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-1, Upper=0)
                -> Bonsai.Numerics.Distributions.Sample
                -> WorkflowOutput
            #6, #8 -> Merge => #9
            #0 -> Condition Asym_Right?
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=StringProperty(Value=Asym_Right))
                -> WorkflowOutput
            -> SelectMany Coin_Flip => #11
                Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample
                -> WorkflowOutput
            -> Condition "< Boundary"
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> SelectMany Asym => #13
                Timer(DueTime=PT0S, Period=PT0.01S)
                -> SelectMany Exp => #1
                    SubscribeSubject Dist_Exp_Rate
                    -> PropertyMapping(Rate)
                    -> Bonsai.Numerics.Distributions.CreateExponential(Rate=2.1532900333404541)
                    -> Bonsai.Numerics.Distributions.Sample
                    -> Multiply(Operand=DoubleProperty(Value=-1))
                    -> Take(Count=1)
                    -> WorkflowOutput
                ExternalizedMapping(Lower) => #2
                #1, #2 -> Condition ">-1 ?"
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=Lower)) => #1
                    #0, #1 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=-1))
                    -> WorkflowOutput
                -> Take(Count=1)
                -> WorkflowOutput
            #11 -> Condition "> Boundary"
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> SelectMany Unif => #15
                ExternalizedMapping(Lower, Upper)
                -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample
                -> WorkflowOutput
            #13, #15 -> Merge => #16
            #2, #9, #16 -> Merge
            -> SelectMany Play
                SubscribeSubject Stim_Dur
                -> PropertyMapping(DueTime) => #1
                WorkflowInput Source1
                -> PropertyMapping(Value)
                -> FloatProperty(Value=-0.186032221)
                -> MulticastSubject Stim_Relative => #5
                #5, #1 -> Delay(DueTime=PT0.05S)
                -> Take(Count=1)
                -> WorkflowOutput
            -> WorkflowOutput
        #0 -> Condition On
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany Anti_Bias(Description="Assumes this will only work with a uniform distribution") => #4
            SubscribeSubject P_Right => #0
            Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
            -> Bonsai.Numerics.Distributions.Sample => #2
            #2, #0 -> Zip => #3
            -> LessThan
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany "> boundary" => #6
                ExternalizedMapping(Lower, Upper)
                -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample
                -> PropertyMapping(Value)
                -> FloatProperty(Value=0.735471547)
                -> MulticastSubject Stim_Relative => #5
                SubscribeSubject Stim_Dur
                -> PropertyMapping(DueTime) => #7
                #5, #7 -> Delay(DueTime=PT0.15S)
                -> Take(Count=1)
                -> WorkflowOutput
            #3 -> GreaterThanOrEqual
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany "< boundary" => #9
                ExternalizedMapping(Lower, Upper)
                -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-1, Upper=0)
                -> Bonsai.Numerics.Distributions.Sample
                -> PropertyMapping(Value)
                -> FloatProperty(Value=-0.361624658)
                -> MulticastSubject Stim_Relative => #5
                SubscribeSubject Stim_Dur
                -> PropertyMapping(DueTime) => #7
                #5, #7 -> Delay(DueTime=PT0.15S)
                -> Take(Count=1)
                -> WorkflowOutput
            #6, #9 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #2, #4 -> Merge
        -> SelectMany Write_NaN
            SubscribeSubject Stim_Type => #0
            -> Condition PT
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=StringProperty(Value=PT))
                -> WorkflowOutput
            -> Bonsai.Scripting.IronPython.PythonTransform NaN
              Script:
                from System import Single

                @returns(Single)
                def process(value):
                  return (Single(float.NaN))
            -> MulticastSubject WN_Amp => #3
            #0 -> Condition WN
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=StringProperty(Value=WN))
                -> WorkflowOutput
            -> Bonsai.Scripting.IronPython.PythonTransform NaN
              Script:
                from System import Single

                @returns(Single)
                def process(value):
                  return (Single(float.NaN))
            -> MulticastSubject Tone => #6
            #3, #6 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> Take(Count=1) => #7
        WorkflowInput Source1
        -> SelectMany Stim_Epoch => #9
            WorkflowInput Source1
            -> StringProperty(Value=Stimulus)
            -> MulticastSubject Trial_Epoch
            -> WorkflowOutput
        #7, #9 -> CombineLatest
        -> WorkflowOutput
    -> SelectMany GoCue => #2
        WorkflowInput Source1
        -> SelectMany GoCue_Epoch => #1
            WorkflowInput Source1
            -> StringProperty(Value=GoCue)
            -> MulticastSubject Trial_Epoch
            -> SelectMany Fire_Go_Cue => #3
                SubscribeSubject GoCueDur
                -> Bonsai.Scripting.IronPython.PythonTransform Float_To_Str
                  Script:
                    @returns(str)
                    def process(value):
                        return str(value)
                -> WorkflowOutput
            StringProperty(Value=Go_Cue_Start) => #4
            #3, #4 -> CombineLatest
            -> MulticastSubject Event_Log
            -> WorkflowOutput
        SubscribeSubject GoCueDur
        -> PropertyMapping(DueTime) => #3
        #1, #3 -> Delay(DueTime=PT0.3S)
        -> MemberSelector(Selector=Item1) => #5
        StringProperty(Value=Go_Cue_End) => #6
        #5, #6 -> CombineLatest
        -> MulticastSubject Event_Log
        -> WorkflowOutput
    -> SelectMany Response => #3
        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=1) => #2
        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=2) => #5
        #2, #5 -> Merge
        -> Take(Count=1)
        -> Sink ResetSpouts
            SubscribeSubject Beam1Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BooleanProperty(Value=true)
            -> MulticastSubject Beam1Bool

            SubscribeSubject Beam2Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BooleanProperty(Value=true)
            -> MulticastSubject Beam2Bool
        -> Sink RecordFirstLick
            WorkflowInput Source1
            -> MulticastSubject FirstLick
            -> WorkflowOutput
        -> Take(Count=1) => #10
        -> Equal(Operand=IntProperty(Value=1)) => #11
        SubscribeSubject CorrectCount => #12
        SubscribeSubject Stim_Relative => #13
        -> LessThan(Operand=IntProperty(Value=0)) => #14
        #11, #14 -> Zip
        -> LogicalAnd
        -> Condition => #17
            WorkflowInput Source1
            -> WorkflowOutput
        #13 -> GreaterThan(Operand=IntProperty(Value=0)) => #18
        #11, #18 -> Zip
        -> LogicalAnd
        -> Condition => #21
            WorkflowInput Source1
            -> WorkflowOutput
        #10 -> Equal(Operand=IntProperty(Value=2)) => #22
        #22, #18 -> Zip
        -> LogicalAnd
        -> Condition => #25
            WorkflowInput Source1
            -> WorkflowOutput
        #17, #25 -> Merge
        -> BooleanProperty(Value=true) => #27
        #22, #14 -> Zip
        -> LogicalAnd
        -> Condition => #30
            WorkflowInput Source1
            -> WorkflowOutput
        #21, #30 -> Merge
        -> BooleanProperty(Value=false) => #32
        #27, #32 -> Merge
        -> MulticastSubject Correct => #34
        -> Take(Count=1) => #35
        #34 -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1) => #37
        #37, #12 -> Zip
        -> Take(Count=1)
        -> Add => #40
        #34 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=0) => #42
        #42, #12 -> Zip
        -> Add => #44
        #40, #44 -> Merge
        -> MulticastSubject CorrectCount => #46
        #35, #46 -> Zip
        -> MemberSelector(Selector=Item1) => #48
        WorkflowInput Source1
        -> SelectMany Response_Epoch => #50
            WorkflowInput Source1
            -> StringProperty(Value=Response)
            -> MulticastSubject Trial_Epoch
            -> WorkflowOutput
        #48, #50 -> CombineLatest
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #4
    SubscribeSubject ResponseWindow
    -> PropertyMapping(DueTime) => #6
    #2, #6 -> Delay(DueTime=PT3S)
    -> BooleanProperty(Value=true) => #8
    #4, #8 -> Merge
    -> Take(Count=1)
    -> MulticastSubject AbortTrial => #11
    -> Condition
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> SelectMany Feedback => #13
        SubscribeSubject Correct => #0
        -> Condition Yes
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany Success
            SubscribeSubject FirstLick => #0
            -> Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            -> SelectMany RewardRight => #2
                WorkflowInput Source1
                -> BooleanProperty(Value=true)
                -> MulticastSubject Right_Valve => #2
                SubscribeSubject RightValveTime
                -> PropertyMapping(DueTime) => #4
                #2, #4 -> Delay(DueTime=PT0.04S)
                -> BooleanProperty(Value=false)
                -> MulticastSubject Right_Valve
                -> IntProperty(Value=1)
                -> MulticastSubject "RewSide "
                -> WorkflowOutput
            #0 -> Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> SelectMany RewardLeft => #4
                WorkflowInput Source1
                -> BooleanProperty(Value=true)
                -> MulticastSubject Left_Valve => #2
                SubscribeSubject LeftValveTime
                -> PropertyMapping(DueTime) => #4
                #2, #4 -> Delay(DueTime=PT0.04S)
                -> BooleanProperty(Value=false)
                -> MulticastSubject Left_Valve
                -> IntProperty(Value=0)
                -> MulticastSubject "RewSide "
                -> WorkflowOutput
            #4, #2 -> Merge
            -> WorkflowOutput
        -> IntProperty(Value=1) => #3
        #0 -> Condition No
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany Failure
            WorkflowInput Source1
            -> SelectMany Timeout
                WorkflowInput Source1 => #0
                SubscribeSubject TimeoutDuration
                -> PropertyMapping(DueTime) => #2
                #0, #2 -> Delay(DueTime=PT3S)
                -> WorkflowOutput
            -> WorkflowOutput
        -> IntProperty(Value=0) => #6
        #3, #6 -> Merge => #7
        WorkflowInput Source1
        -> SelectMany Feedback_Epoch => #9
            WorkflowInput Source1
            -> StringProperty(Value=Feedback)
            -> MulticastSubject Trial_Epoch
            -> WorkflowOutput
        #7, #9 -> CombineLatest
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    #11 -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> IntProperty(Value=-1) => #15
    #13, #15 -> Merge
    -> MulticastSubject TrialOutcome
    -> Sink IncrementTrial
        SubscribeSubject TrialNumber => #0
        IntProperty(Value=1) => #1
        #0, #1 -> Zip
        -> Add
        -> MulticastSubject TrialNumber
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput
    #2, #3 -> GroupWorkflow Record_Latency
        SubscribeSubject TrialEnd
        -> Condition => #1
            WorkflowInput Source1
            -> WorkflowOutput
        WorkflowInput Source1
        -> SelectMany Start_Timer => #3
            Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.001S)
            -> MulticastSubject Time
            -> WorkflowOutput
        WorkflowInput Source2 => #4
        #1, #4 -> Merge => #5
        #3, #5 -> TakeUntil
        -> TakeLast(Count=1)
        -> MulticastSubject "Response_Latency (ms)"
        -> WorkflowOutput
-> SelectMany EndTrial
    WorkflowInput Source1
    -> BooleanProperty(Value=true)
    -> MulticastSubject TrialEnd
    -> SelectMany Log_End
        StringProperty(Value=Trial_End) => #0
        SubscribeSubject TrialNumber
        -> Bonsai.Scripting.IronPython.PythonTransform To_Str => #2
          Script:
            @returns(str)
            def process(value):
                return str(value)
        #2, #0 -> CombineLatest
        -> MulticastSubject Event_Log
        -> WorkflowOutput
    -> Sink ITI_Epoch
        WorkflowInput Source1
        -> StringProperty(Value=ITI)
        -> MulticastSubject Trial_Epoch
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput
-> Repeat => #13
SubscribeSubject Exp_End
-> Condition
    WorkflowInput Source1
    -> WorkflowOutput
-> SelectMany End_Processes
    WorkflowInput Source1
    -> SelectMany Valves_Closed
        WorkflowInput Source1 => #0
        -> BooleanProperty(Value=false)
        -> MulticastSubject Left_Valve => #2
        #0 -> BooleanProperty(Value=false)
        -> MulticastSubject Right_Valve => #4
        #2, #4 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Speakers_Off
        WorkflowInput Source1
        -> IntProperty(Value=30)
        -> MulticastSubject SoundIndex
        -> WorkflowOutput
    -> WorkflowOutput
-> Bonsai.Shaders.Delay(DueTime=PT1S) => #17
#13, #17 -> TakeUntil
-> WorkflowOutput

GroupWorkflow Background_Running_Signal
    SubscribeSubject Trial_Epoch
    -> Condition ITI
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value=ITI))
        -> WorkflowOutput
    -> SelectMany Running_Signal
        SubscribeSubject Green_Circle
        -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0, LocationY=0, Layer=0, Diameter=1, ColorR=0.267441869, ColorG=1, ColorB=0.383720934, ColorA=1)
        -> IntProperty(Value=0) => #2
        SubscribeSubject Bonsai_Running
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawText.bonsai
          Text=Running
          Font="Microsoft Sans Serif, 72pt"
          Alignment=Center
          LineAlignment=Center
          TextRenderingHint=AntiAliasGridFit
          Color(Val0=0, Val1=255, Val2=0, Val3=255)
          ExtentX=1
          ExtentY=1
          LocationX=0
          LocationY=0.6976744
          Layer=0
          Angle=0
        -> IntProperty(Value=0) => #5
        #2, #5 -> Merge => #6
        Bonsai.Shaders.Timer(DueTime=PT0.5S) => #7
        #6, #7 -> TakeUntil
        -> WorkflowOutput
    -> WorkflowOutput

GroupWorkflow Antibias
  Description:
    Takes n trials back and calculates the difference between what the mouse should've done Vs what it actually did
    Weigh this difference vector by an exponential kernel, then pass through a sigmoid function to generate P(Right)

    FirstLick --> Choice (here 1 for left, 0 for right)
    Tone/WN_Amp --> Stimulus, dictates where the mouse should lick (here 1 for left, 0 for right)

    Defailt params:
    - ant_bias_window = 30
    - exp_rate = 1
    - sigmoid_slope_0 = 2
  Workflow
    FloatProperty(Value=0) => #0
    -> ToArray
    -> BehaviorSubject Hit_Left
    #0 -> ToArray
    -> BehaviorSubject Rule_Left

    DoubleProperty(Value=0.5)
    -> BehaviorSubject P_Right

    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Anti_Bias_Exp_Rate
      Script:
        param = 'Anti_Bias_Exp_Rate'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> PropertyMapping(Value)
    -> FloatProperty(Value=1)
    -> BehaviorSubject Exp_Rate

    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Anti_Bias_Sigmoid_Slope
      Script:
        param = 'Anti_Bias_Sigmoid_Slope'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> PropertyMapping(Value)
    -> FloatProperty(Value=1)
    -> BehaviorSubject Sigmoid_Slope_0

    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Anti_Bias_Window
      Script:
        param = 'Anti_Bias_Window'
        param_type = int
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> PropertyMapping(Value)
    -> IntProperty(Value=30)
    -> BehaviorSubject Anti_Bias_Window

    SubscribeSubject FirstLick => #22
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> FloatProperty(Value=1) => #24
    #22 -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=2))
        -> WorkflowOutput
    -> FloatProperty(Value=0) => #26
    #24, #26 -> Merge => #27
    SubscribeSubject AbortTrial
    -> Condition => #29
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    #27, #29 -> Sample => #30
    SubscribeSubject Anti_Bias_Window
    -> PropertyMapping(Value)
    -> IntProperty(Value=30) => #33
    FloatProperty(Value=0) => #34
    #34, #33 -> Zip
    -> Bonsai.Scripting.IronPython.PythonTransform Gen_floats
      Script:
        @returns(list)
        def process(value):
          float_0 = value[0]
          window_size = value[1]
          result = []
          for _ in range(window_size):
            result.append(float_0)
          return result
    -> Merge
    -> Bonsai.Scripting.IronPython.PythonTransform NaN => #38
      Script:
        from System import Single

        @returns(Single)
        def process(value):
          return (Single(float.NaN))
    #30, #38 -> Merge => #39
    SubscribeSubject Stim_Relative => #40
    -> Condition <0
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=Boundary)) => #1
        #0, #1 -> LessThanOrEqual(Operand=FloatProperty(Value=0))
        -> WorkflowOutput
    -> FloatProperty(Value=1) => #42
    #40 -> Condition >0
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> GreaterThan(Operand=FloatProperty(Value=0))
        -> WorkflowOutput
    -> FloatProperty(Value=0) => #44
    #42, #44 -> Merge
    -> Skip(Count=2) => #46
    #46, #29 -> Sample => #47
    #47, #38 -> Merge => #48
    SubscribeSubject Anti_Bias_Window
    -> PropertyMapping(Count) => #50
    #39, #50 -> BufferCount(Count=30, Skip=1)
    -> SelectMany Count_Hit_Left
        WorkflowInput Source1
        -> Merge
        -> ToArray
        -> MulticastSubject Hit_Left
        -> WorkflowOutput
    -> Merge
    SubscribeSubject Anti_Bias_Window
    -> PropertyMapping(Count) => #55
    #48, #55 -> BufferCount(Count=30, Skip=1)
    -> SelectMany Count_Rule_Left
        WorkflowInput Source1
        -> Merge
        -> ToArray
        -> MulticastSubject Rule_Left
        -> WorkflowOutput
    -> Merge

    SubscribeSubject Hit_Left => #59
    SubscribeSubject Rule_Left => #60
    -> SelectMany Antibias_Params => #61
        SubscribeSubject Anti_Bias_Window => #0
        SubscribeSubject Exp_Rate => #1
        SubscribeSubject Sigmoid_Slope_0 => #2
        #0, #1, #2 -> Zip
        -> WorkflowOutput
    #59, #60, #61 -> Zip
    -> Bonsai.Scripting.IronPython.PythonTransform Gen_P_Right_V2
      Description:
        Takes 3 inputs:
        - array of previous left choices
        - array of previous a priori left
        - tuple of 3 items: trials back, exponential rate and sigmoid slope
        Outputs P(Right)
      Script:
        @returns(float)
        def process(value):
          import math
          hit_left = value[0] #
          rule_left = value[1] #
          diff = [e-rule_left[c] for c,e in enumerate(hit_left)] # difference between hit left and a priori left
          diff_reverse = diff[::-1] # reverse order of incoming array to get earliest trials first

          # weigh this diff_reverse array with an exponential kernel that emphasizes recent history
          trials_back = value[2][0] # set size of exponential window
          rate = value[2][1] # set rate of exponential distribution
          kernel_window = [x / 10.0 for x in range(0, trials_back, 1)] # create kernel range, divide by 10 to capture most releant section of exponential function
          exp_kernel = [rate*(math.exp(-rate*x)) for x in kernel_window] # calculate exp fct for every kernel value
          exp_kernel = [x/sum(exp_kernel) for x in exp_kernel] # normalise
          bias =  sum([diff_reverse[i] * exp_kernel[i] for i in range(len(diff_reverse)) if diff_reverse[i] == diff_reverse[i] and exp_kernel[i] == exp_kernel[i]]) # calculate dot product of diff_reverse with exp_kernel using list comprehension, ignores NaN values
          # bias --> positive means left-bias, negative means right bias

          # pass this bias through a sigmoid function to obtain p_right
          slope_0 = value[2][2] # slope of sigmoid at x = 0
          beta = slope_0 * 4 # follows naturally from differentiation
          p_right = 1 / (1+math.exp(-beta*bias))
          return p_right
    -> MulticastSubject P_Right

GroupWorkflow Save_Data
    SubscribeSubject FirstLick => #0
    SubscribeSubject TrialOutcome => #1
    SubscribeSubject TrialEnd
    -> Condition => #3
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject Animal_ID => #4
    SubscribeSubject "RewSide " => #5
    SubscribeSubject ITI => #6
    SubscribeSubject TrialNumber => #7
    SubscribeSubject AbortTrial => #8
    SubscribeSubject Correct => #9
    SubscribeSubject ResponseWindow => #10
    SubscribeSubject GoCueDur => #11
    SubscribeSubject CorrectCount => #12
    SubscribeSubject Trial_File_Name
    -> PropertyMapping(FileName) => #14
    SubscribeSubject Rig_ID => #15
    SubscribeSubject Room_ID => #16
    #8, #12, #11, #6, #10, #16, #15 -> CombineLatest => #17
    SubscribeSubject Tone => #18
    #4, #7, #18, #0, #9, #5, #1 -> CombineLatest => #19
    #19, #17 -> CombineLatest => #20
    SubscribeSubject Beam1Bool => #21
    -> Timestamp => #22
    -> MemberSelector(Selector=Value) => #23
    #22 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #24
    #21 -> StringProperty(Value=Beam1Bool) => #25
    #23, #24, #25 -> Zip => #26
    SubscribeSubject Beam2Bool => #27
    -> Timestamp => #28
    -> MemberSelector(Selector=Value) => #29
    #28 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #30
    #27 -> StringProperty(Value=Beam2Bool) => #31
    #29, #30, #31 -> Zip => #32
    #26, #32 -> Merge
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #34
      Expression:
        new(
        Item1 as State,
        Item2 as Time,
        Item3 as Spout
        )
    SubscribeSubject Licks_File_Name
    -> PropertyMapping(FileName) => #36
    #34, #36 -> Bonsai.IO.CsvWriter
      FileName=../Data/TEST/SOUND_CAT_CONT_TEST_2023_8_9/Detected_Licks.csv
      Delimiter=","
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true
    -> MemberSelector(Selector=State) => #38
    SubscribeSubject Exp_End
    -> Condition => #40
        WorkflowInput Source1
        -> WorkflowOutput
    Bonsai.IO.SerialStringRead(PortName=ArduinoMega, NewLine=\n)
    -> BufferCount(Count=2, Skip=nil)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Convert.ToSingle(it[0]) as Time,
        Convert.ToInt32(it[1]) == 1 as State
        )
    -> Timestamp => #44
    -> MemberSelector(Selector=Value) => #45
    -> MemberSelector(Selector=Time) => #46
    #45 -> MemberSelector(Selector=State) => #47
    #44 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #48
    #46, #47, #48 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #50
      Expression:
        new(
        Item1 as Arduino_time,
        Item2 as LED_state,
        Item3 as Bonsai_time
        )
    SubscribeSubject Optostim_Data_File_Name
    -> PropertyMapping(FileName) => #52
    SubscribeSubject Subscribe_Saving
    -> Condition => #54
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject Subscribe_Mega
    -> Condition => #56
        WorkflowInput Source1
        -> WorkflowOutput
    #50, #56 -> SubscribeWhen => #57
    #57, #52 -> Bonsai.IO.CsvWriter
      FileName=../Data/TEST/SOUND_CAT_CONT_TEST_2023_8_9/Optostim_Data.txt
      Delimiter=","
      Append=true
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true
    -> MemberSelector(Selector=LED_state) => #59
    SubscribeSubject "Response_Latency (ms)" => #60
    SubscribeSubject Distribution => #61
    SubscribeSubject Stim_Type => #62
    SubscribeSubject WN_Amp => #63
    SubscribeSubject Stim_Dur => #64
    SubscribeSubject Anti_Bias => #65
    SubscribeSubject Stim_Relative => #66
    #60, #61, #62, #63, #64, #65, #66 -> CombineLatest => #67
    #20, #67 -> CombineLatest => #68
    SubscribeSubject Speaker_Calib => #69
    SubscribeSubject Opto_ON => #70
    SubscribeSubject "Light_Freq (Hz)" => #71
    SubscribeSubject Opto_Onset => #72
    SubscribeSubject Perc_Opto_Trials => #73
    SubscribeSubject Opto_Offset => #74
    SubscribeSubject Fiber => #75
    #69, #70, #71, #73, #72, #74, #75 -> CombineLatest => #76
    #68, #76 -> CombineLatest => #77
    SubscribeSubject Dist_Exp_Rate => #78
    SubscribeSubject Mask => #79
    SubscribeSubject Stimulation_Site => #80
    SubscribeSubject Stimulation_Type => #81
    #78, #79, #81, #80 -> CombineLatest => #82
    #77, #82 -> CombineLatest => #83
    #83, #3 -> Sample
    -> Timestamp => #85
    -> MemberSelector(Selector=Value) => #86
    #85 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #87
    #86, #87 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #89
      Expression:
        new(
        Item1.Item1.Item1.Item1.Item1.Item1 as Animal_ID,
        Item1.Item1.Item1.Item1.Item1.Item2 as TrialNumber,
        Item1.Item1.Item1.Item1.Item1.Item3 as Tone,
        Item1.Item1.Item1.Item1.Item1.Item4 as FirstLick,
        Item1.Item1.Item1.Item1.Item1.Item5 as Correct,
        Item1.Item1.Item1.Item1.Item1.Item6 as Rewside,
        Item1.Item1.Item1.Item1.Item1.Item7 as TrialOutcome,

        Item1.Item1.Item1.Item1.Item2.Item1 as AbortTrial,
        Item1.Item1.Item1.Item1.Item2.Item2 as CorrectCount,
        Item1.Item1.Item1.Item1.Item2.Item3 as GoCueDur,
        Item1.Item1.Item1.Item1.Item2.Item4 as ITI,
        Item1.Item1.Item1.Item1.Item2.Item5 as ReponseWindow,
        Item1.Item1.Item1.Item1.Item2.Item6 as Room_ID,
        Item1.Item1.Item1.Item1.Item2.Item7 as Rig_ID,

        Item1.Item1.Item1.Item2.Item1 as Response_Latency,
        Item1.Item1.Item1.Item2.Item2 as Distribution,
        Item1.Item1.Item1.Item2.Item3 as Stim_Type,
        Item1.Item1.Item1.Item2.Item4 as WN_Amp,
        Item1.Item1.Item1.Item2.Item5 as Stim_Dur,
        Item1.Item1.Item1.Item2.Item6 as Anti_Bias,
        Item1.Item1.Item1.Item2.Item7 as Stim_Relative,

        Item1.Item1.Item2.Item1 as Speaker_Calib,
        Item1.Item1.Item2.Item2 as Opto_ON,
        Item1.Item1.Item2.Item3 as Light_Freq,
        Item1.Item1.Item2.Item4 as Perc_Opto_Trials,
        Item1.Item1.Item2.Item5 as Opto_Onset,
        Item1.Item1.Item2.Item6 as Opto_Offset,
        Item1.Item1.Item2.Item7 as Fiber,

        Item1.Item2.Item1 as Dist_Exp_Rate,
        Item1.Item2.Item2 as Mask,
        Item1.Item2.Item3 as Stimulation_Type,
        Item1.Item2.Item4 as Stimulation_Site,

        Item2 as Time
        )
    #89, #14 -> Bonsai.IO.CsvWriter
      FileName=../Data/TEST/SOUND_CAT_CONT_TEST_2023_8_9/Trial_Summary.csv
      Delimiter=","
      Append=true
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true
    -> MemberSelector(Selector=Correct) => #91
    #91, #59, #38 -> Merge => #92
    #92, #40 -> TakeUntil => #93
    #93, #54 -> SubscribeWhen
    #89 -> WorkflowOutput

GroupWorkflow "Stats " => #23
  Description:
    Light Blue = Percent_Correct
    Red = Percent_Right_Licks
    Orange = Percent_Abort_Trial
    Dark Blue = Normalised Response Latency
  Workflow
    GroupWorkflow Percent_Correct => #0
        SubscribeSubject Visualizer_Window_Size
        -> PropertyMapping(Count) => #1
        SubscribeSubject Correct => #2
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1) => #4
        #2 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=0) => #6
        #4, #6 -> Merge => #7
        #7, #1 -> Bonsai.Dsp.Buffer(Count=30, Skip=1)
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0)
        -> MulticastSubject Percent_Correct
        -> WorkflowOutput
    GroupWorkflow Percent_Abort_Trial => #1
        SubscribeSubject Visualizer_Window_Size
        -> PropertyMapping(Count) => #1
        SubscribeSubject AbortTrial => #2
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1) => #4
        #2 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=0) => #6
        #4, #6 -> Merge => #7
        #7, #1 -> Bonsai.Dsp.Buffer(Count=30, Skip=1)
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0)
        -> WorkflowOutput
    GroupWorkflow Percent_First_Lick_Right => #2
        SubscribeSubject FirstLick => #0
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> IntProperty(Value=0) => #2
        #0 -> Condition
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> IntProperty(Value=1) => #4
        #2, #4 -> Merge => #5
        SubscribeSubject Visualizer_Window_Size
        -> PropertyMapping(Count) => #7
        #5, #7 -> Bonsai.Dsp.Buffer(Count=30, Skip=1)
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0)
        -> MulticastSubject Percent_Right_Licks
        -> WorkflowOutput
    GroupWorkflow Average_Normalised_Latency => #3
        SubscribeSubject Visualizer_Window_Size
        -> PropertyMapping(Count) => #1
        SubscribeSubject "Response_Latency (ms)" => #2
        #2, #1 -> Bonsai.Dsp.Buffer(Count=30, Skip=1)
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #5
        SubscribeSubject ResponseWindow
        -> MemberSelector(Selector=TotalSeconds)
        -> Multiply(Operand=DoubleProperty(Value=1000))
        -> PropertyMapping(Value) => #9
        #5, #9 -> Divide(Operand=DoubleProperty(Value=3000))
        -> WorkflowOutput
    DoubleProperty(Value=0) => #4
    #0, #4 -> Merge => #5
    DoubleProperty(Value=0) => #6
    #1, #6 -> Merge => #7
    DoubleProperty(Value=0) => #8
    #2, #8 -> Merge => #9
    DoubleProperty(Value=0) => #10
    #3, #10 -> Merge => #11
    #5, #7, #9, #11 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
      Expression:
        new(
        Item1 as Percent_Correct,
        Item2 as Percent_Abort_Trial,
        Item3 as Right_Bias,
        Item4 as Normalized_Response_Latency
        )
    GroupWorkflow Psycometric_Stats
        SubscribeSubject Correct => #0
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> FloatProperty(Value=1) => #2
        #0 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> FloatProperty(Value=0) => #4
        #2, #4 -> Merge
        -> Skip(Count=1) => #6
        SubscribeSubject AbortTrial
        -> Condition => #8
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #6, #8 -> Sample => #9
        -> Condition -1:-0.75
            SubscribeSubject Stim_Relative => #0
            ExternalizedMapping(Value(DisplayName=Lower)) => #1
            #0, #1 -> GreaterThanOrEqual(Operand=FloatProperty(Value=-1)) => #2
            ExternalizedMapping(Value(DisplayName=Upper)) => #3
            #0, #3 -> LessThan(Operand=FloatProperty(Value=-0.75)) => #4
            #2, #4 -> Zip
            -> LogicalAnd
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #11
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        FloatProperty(Value=0) => #12
        #11, #12 -> Merge => #13
        #9 -> Condition -0.75:-0.50
            SubscribeSubject Stim_Relative => #0
            ExternalizedMapping(Value(DisplayName=Lower)) => #1
            #0, #1 -> GreaterThanOrEqual(Operand=FloatProperty(Value=-0.75)) => #2
            ExternalizedMapping(Value(DisplayName=Upper)) => #3
            #0, #3 -> LessThan(Operand=FloatProperty(Value=-0.5)) => #4
            #2, #4 -> Zip
            -> LogicalAnd
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #15
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        #15, #12 -> Merge => #16
        #9 -> Condition -0.50:-0.25
            SubscribeSubject Stim_Relative => #0
            ExternalizedMapping(Value(DisplayName=Lower)) => #1
            #0, #1 -> GreaterThanOrEqual(Operand=FloatProperty(Value=-0.5)) => #2
            ExternalizedMapping(Value(DisplayName=Upper)) => #3
            #0, #3 -> LessThan(Operand=FloatProperty(Value=-0.25)) => #4
            #2, #4 -> Zip
            -> LogicalAnd
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #18
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        #18, #12 -> Merge => #19
        #9 -> Condition -0.25:0
            SubscribeSubject Stim_Relative => #0
            ExternalizedMapping(Value(DisplayName=Lower)) => #1
            #0, #1 -> GreaterThanOrEqual(Operand=FloatProperty(Value=-0.25)) => #2
            ExternalizedMapping(Value(DisplayName=Upper)) => #3
            #0, #3 -> LessThan(Operand=FloatProperty(Value=0)) => #4
            #2, #4 -> Zip
            -> LogicalAnd
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #21
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        #21, #12 -> Merge => #22
        #9 -> Condition 0:0.25
            SubscribeSubject Stim_Relative => #0
            ExternalizedMapping(Value(DisplayName=Lower)) => #1
            #0, #1 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0)) => #2
            ExternalizedMapping(Value(DisplayName=Upper)) => #3
            #0, #3 -> LessThan(Operand=FloatProperty(Value=0.25)) => #4
            #2, #4 -> Zip
            -> LogicalAnd
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #24
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        #24, #12 -> Merge => #25
        #9 -> Condition 0.25:0.50
            SubscribeSubject Stim_Relative => #0
            ExternalizedMapping(Value(DisplayName=Lower)) => #1
            #0, #1 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.25)) => #2
            ExternalizedMapping(Value(DisplayName=Upper)) => #3
            #0, #3 -> LessThan(Operand=FloatProperty(Value=0.5)) => #4
            #2, #4 -> Zip
            -> LogicalAnd
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #27
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        #27, #12 -> Merge => #28
        #9 -> Condition 0.50:0.75
            SubscribeSubject Stim_Relative => #0
            ExternalizedMapping(Value(DisplayName=Lower)) => #1
            #0, #1 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.5)) => #2
            ExternalizedMapping(Value(DisplayName=Upper)) => #3
            #0, #3 -> LessThan(Operand=FloatProperty(Value=0.75)) => #4
            #2, #4 -> Zip
            -> LogicalAnd
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #30
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        #30, #12 -> Merge => #31
        #13, #16, #19, #22, #25, #28, #31 -> CombineLatest => #32
        #9 -> Condition 0.75:1
            SubscribeSubject Stim_Relative => #0
            ExternalizedMapping(Value(DisplayName=Lower)) => #1
            #0, #1 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.75)) => #2
            ExternalizedMapping(Value(DisplayName=Upper)) => #3
            #0, #3 -> LessThan(Operand=FloatProperty(Value=1)) => #4
            #2, #4 -> Zip
            -> LogicalAnd
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #34
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        #34, #12 -> Merge => #35
        FloatProperty(Value=0) => #36
        #32, #35, #36 -> CombineLatest
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #15
      Expression:
        new(
        Item1.Item1 as S1,
        Item1.Item2 as S2,
        Item1.Item3 as S3,
        Item1.Item4 as S4,
        Item1.Item5 as S5,
        Item1.Item6 as S6,
        Item1.Item7 as S7,
        Item2 as S8,

        Item3 as Stim_Relative
        )
    #13, #15 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as General_Stats,
        Item2 as Psychometric_Stats
        )
    -> WorkflowOutput
-> MemberSelector(Selector=General_Stats)
-> Bonsai.Design.Visualizers.RollingGraphBuilder
  ValueSelector="Percent_Correct,Percent_Abort_Trial,Right_Bias,Normalized_Response_Latency"
  SymbolType=None
  LineWidth=3
  Capacity=nil
  Min=nil
  Max=nil
#23 -> MemberSelector(Selector=Psychometric_Stats)
-> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Stim_Relative, ValueSelector="S1,S2,S3,S4,S5,S6,S7,S8", BaseAxis=X, BarType=Cluster, Capacity=8, Min=0, Max=1)

SubscribeSubject Event_Log
-> Timestamp => #29
-> MemberSelector(Selector=Value) => #30
#29 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #31
#30, #31 -> Zip
