WorkflowBuilder(Version=2.7.0)
GroupWorkflow Variables
    BooleanProperty(Value=false)
    -> BehaviorSubject Trial_End

    IntProperty(Value=1)
    -> BehaviorSubject Trial_Number

    BooleanProperty(Value=false)
    -> BehaviorSubject Experiment_End

    StringProperty(Value=Launch_Protocol) => #6
    StringProperty(Value=Launch_Protocol) => #7
    #6, #7 -> CombineLatest
    -> BehaviorSubject Event_Log

    FloatProperty(Value=0)
    -> BehaviorSubject Stim_Relative

    BooleanProperty(Value=false) => #12
    -> BehaviorSubject Left_Valve
    #12 -> BehaviorSubject Right_Valve

    StringProperty
    -> BehaviorSubject Reward_Side

    BooleanProperty(Value=false) => #17
    -> BehaviorSubject Beam_1_Bool
    #17 -> BehaviorSubject Beam_2_Bool

    StringProperty(Value="")
    -> BehaviorSubject First_Lick

    StringProperty(Value=Left)
    -> Disable Skip(Count=1)
    -> BehaviorSubject Correct_Side

    BooleanProperty(Value=false)
    -> BehaviorSubject Correct

    IntProperty(Value=0)
    -> BehaviorSubject Correct_Side_Count

    DoubleProperty(Value=0)
    -> BehaviorSubject P_Right

    IntProperty(Value=0)
    -> BehaviorSubject Response_Latency

    StringProperty
    -> BehaviorSubject Trial_Outcome

    BooleanProperty(Value=false)
    -> BehaviorSubject Abort_Trial

    StringProperty
    -> BehaviorSubject Trial_Epoch

    IntProperty(Value=0)
    -> BehaviorSubject Correct_Count

    StringProperty
    -> BehaviorSubject Air_Puff_Side

    IntProperty(Value=0)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: ' '
    -> BehaviorSubject Arduino_Command

    Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
    -> Bonsai.Numerics.Distributions.Sample => #47
    -> Condition 0
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> StringProperty(Value=Pro) => #49
    #47 -> Condition 1
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> StringProperty(Value=Anti) => #51
    #49, #51 -> Merge
    -> Take(Count=1)
    -> BehaviorSubject Air_Puff_Contingency

    BooleanProperty(Value=false) => #55
    -> BehaviorSubject Launch_Protocol
    #55 -> BehaviorSubject Subscribe_File_Names
    #55 -> BehaviorSubject Subscribe_Saving
    #55 -> BehaviorSubject Subscribe_Camera
    #55 -> BehaviorSubject Subscribe_Soundcard
    #55 -> BehaviorSubject Subscribe_Beh_Board
    #55 -> BehaviorSubject Subscribe_Nano
    #55 -> BehaviorSubject Subscribe_Mega
    #55 -> BehaviorSubject Subscribe_Shaders
    #55 -> BehaviorSubject Subscribe_Zapit
    #55 -> BehaviorSubject Subscribe_Params

    BooleanProperty(Value=false)
    -> Bonsai.Harp.Format(MessageType=Write, Address=32, PayloadType=U8)
    -> BehaviorSubject Beh_Module

    FloatProperty(Value=0)
    -> BehaviorSubject WN_Amplitude

    IntProperty(Value=15)
    -> BehaviorSubject Min_Block_Length

    IntProperty(Value=10)
    -> BehaviorSubject Window_Perf_Size

    FloatProperty(Value=0) => #76
    -> ToArray
    -> BehaviorSubject Hit_Left
    #76 -> ToArray
    -> BehaviorSubject Rule_Left

    FloatProperty(Value=0)
    -> BehaviorSubject Block_Performance_Threshold

    BooleanProperty(Value=false) => #83
    -> BehaviorSubject Fiber
    #83 -> BehaviorSubject Mask

    IntProperty(Value=0)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: 's'
    -> BehaviorSubject Arduino_Mega_Command

    FloatProperty(Value=0)
    -> BehaviorSubject Perf_Prev_50

    ByteProperty(Value=0) => #91
    ByteProperty(Value=0) => #92
    ByteProperty(Value=0) => #93
    ByteProperty(Value=0) => #94
    FloatProperty(Value=0) => #95
    FloatProperty(Value=0) => #96
    FloatProperty(Value=0) => #97
    #91, #92, #94, #93, #97, #96, #95 -> Zip
    -> Skip(Count=1)
    -> BehaviorSubject Zapit_Byte_Tuple

    ByteProperty(Value=0) => #101
    ByteProperty(Value=11) => #102
    #101, #102 -> Zip
    -> Skip(Count=1)
    -> BehaviorSubject Response_Byte_Tuple

    DoubleProperty(Value=0)
    -> Skip(Count=1)
    -> BehaviorSubject Datetime_Double

    ByteProperty(Value=0)
    -> Skip(Count=1)
    -> BehaviorSubject Message_Type_Byte

    StringProperty
    -> Skip(Count=1)
    -> BehaviorSubject Session_Epoch

    ByteProperty(Value=0)
    -> Skip(Count=4) => #116
    -> BehaviorSubject Trial_State_Command_Byte
    #116 -> BehaviorSubject Arg_Keys_Byte
    #116 -> BehaviorSubject Bool_Vals_Byte
    #116 -> BehaviorSubject Condition_Num_Byte

    ByteProperty(Value=0) => #121
    ByteProperty(Value=0) => #122
    ByteProperty(Value=0) => #123
    ByteProperty(Value=0) => #124
    FloatProperty(Value=0) => #125
    FloatProperty(Value=0) => #126
    FloatProperty(Value=0) => #127
    #124, #123, #122, #121, #127, #126, #125 -> CombineLatest
    -> Skip(Count=1)
    -> BehaviorSubject Server_Message

    BooleanProperty(Value=false)
    -> BehaviorSubject Zapit

    FloatProperty(Value=0)
    -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromSeconds
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject Working_Memory_Delay

    Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
    -> Bonsai.Numerics.Distributions.Sample
    -> Disable Take(Count=1)
    -> Skip(Count=1)
    -> BehaviorSubject History_Buffer
    -> Disable PublishSubject History_Buffer

    IntProperty(Value=1)
    -> Skip(Count=1)
    -> BehaviorSubject Trial_Side

    FloatProperty(Value=0)
    -> Skip(Count=1) => #146
    -> BehaviorSubject Laser_Power_Float
    #146 -> BehaviorSubject Start_Delay_Float
    #146 -> BehaviorSubject Stim_Duration_Float

    DoubleProperty(Value=NaN)
    -> BehaviorSubject Window_Open_Time

    DoubleProperty(Value=NaN)
    -> BehaviorSubject First_Lick_Time

    DoubleProperty(Value=NaN)
    -> BehaviorSubject Early_Lick_Time

GroupWorkflow Subscription_Order
    BooleanProperty(Value=false)
    -> Bonsai.Shaders.Delay(DueTime=PT3S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject Subscribe_File_Names
    -> Bonsai.Shaders.Delay(DueTime=PT0.1S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject Subscribe_Saving
    -> Bonsai.Shaders.Delay(DueTime=PT0.1S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject Subscribe_Params => #9
    -> Condition Emulator_Off
        SubscribeSubject Emulator
        -> BitwiseNot
        -> WorkflowOutput
    -> Bonsai.Shaders.Delay(DueTime=PT0.1S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject Subscribe_Camera
    -> Bonsai.Shaders.Delay(DueTime=PT0.1S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject Subscribe_Soundcard => #16
    -> Condition No_Arduino
        SubscribeSubject Arduino
        -> BitwiseNot
        -> WorkflowOutput
    -> Bonsai.Shaders.Delay(DueTime=PT0.1S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject Subscribe_Beh_Board => #20
    #16 -> Condition Arduino
        SubscribeSubject Arduino
        -> WorkflowOutput
    -> Bonsai.Shaders.Delay(DueTime=PT0.1S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject Subscribe_Nano => #24
    #20, #24 -> Merge
    -> Bonsai.Shaders.Delay(DueTime=PT0.1S) => #26
    -> Condition Opto_ON
        SubscribeSubject Opto_ON
        -> WorkflowOutput
    -> BooleanProperty(Value=true)
    -> MulticastSubject Subscribe_Mega => #29
    -> Condition Zapit
        SubscribeSubject Opto_Type => #0
        ExternalizedMapping(Value(DisplayName=Opto_Type)) => #1
        #0, #1 -> Equal(Operand=StringProperty(Value=Zapit))
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #31
    #29 -> Condition Not_Zapit => #32
        SubscribeSubject Opto_Type => #0
        ExternalizedMapping(Value(DisplayName=Opto_Type)) => #1
        #0, #1 -> NotEqual(Operand=StringProperty(Value=Zapit))
        -> WorkflowOutput
    #26 -> Condition Opto_OFF
        SubscribeSubject Opto_ON
        -> BitwiseNot
        -> WorkflowOutput
    -> BooleanProperty(Value=false)
    -> MulticastSubject Subscribe_Mega => #35
    #32, #35 -> Merge
    -> BooleanProperty(Value=false) => #37
    #31, #37 -> Merge
    -> Bonsai.Shaders.Delay(DueTime=PT0.1S)
    -> MulticastSubject Subscribe_Zapit => #40
    #9 -> Condition Emulator_On
        SubscribeSubject Emulator
        -> WorkflowOutput
    -> Bonsai.Shaders.Delay(DueTime=PT0.1S) => #42
    -> Condition Opto_ON => #43
        SubscribeSubject Opto_ON
        -> WorkflowOutput
    -> Condition Zapit
        SubscribeSubject Opto_Type => #0
        ExternalizedMapping(Value(DisplayName=Opto_Type)) => #1
        #0, #1 -> Equal(Operand=StringProperty(Value=Zapit))
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #45
    #43 -> Condition Fiber => #46
        SubscribeSubject Opto_Type => #0
        ExternalizedMapping(Value(DisplayName=Opto_Type)) => #1
        #0, #1 -> Equal(Operand=StringProperty(Value=Fiber))
        -> WorkflowOutput
    #42 -> Condition Opto_OFF => #47
        SubscribeSubject Opto_ON
        -> BitwiseNot
        -> WorkflowOutput
    #46, #47 -> Merge
    -> BooleanProperty(Value=false) => #49
    #45, #49 -> Merge
    -> Bonsai.Shaders.Delay(DueTime=PT0.1S)
    -> MulticastSubject Subscribe_Zapit => #52
    #40, #52 -> Merge
    -> Bonsai.Shaders.Delay(DueTime=PT0.1S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject Launch_Protocol

GroupWorkflow Render_Loop
    Bonsai.Shaders.Timer(DueTime=PT0S)

    Bonsai.Shaders.CreateWindow
      Width=250
      Height=250
      VSync=On
      SwapSync=false
      ClearColor=Black
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Normal
      DisplayDevice=Primary
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Resources.LoadResources

    Bonsai.Shaders.RenderFrame
    -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai) => #5
    -> PublishSubject Text
    #5 -> PublishSubject Circle

    SubscribeSubject Circle
    -> IncludeWorkflow => #9
      Path=BonVision:Primitives.DrawCircle.bonsai
      LocationX=0
      LocationY=0
      Layer=0
      Diameter=1
      ColorR=1
      ColorG=0.0116279069
      ColorB=0
      ColorA=0.616279066
    SubscribeSubject Subscribe_Params
    -> Condition => #11
        WorkflowInput Source1
        -> WorkflowOutput
    #9, #11 -> SubscribeWhen

    SubscribeSubject Text
    -> IncludeWorkflow => #14
      Path=BonVision:Primitives.DrawText.bonsai
      Text="Params Loaded"
      Font="Microsoft Sans Serif, 30pt"
      Alignment=Center
      LineAlignment=Center
      TextRenderingHint=AntiAliasGridFit
      Color(Val0=0, Val1=0, Val2=231, Val3=231)
      ExtentX=1
      ExtentY=1
      LocationX=0
      LocationY=0.6976744
      Layer=0
      Angle=0
    SubscribeSubject Subscribe_Params
    -> Condition => #16
        WorkflowInput Source1
        -> WorkflowOutput
    #14, #16 -> SubscribeWhen

GroupWorkflow Params
    Bonsai.IO.CsvReader(FileName=..\Params\Rig_Params.csv, SkipRows=0)
    -> ReplaySubject Rig_Params(BufferSize=nil)

    Bonsai.IO.CsvReader(FileName=..\Params\Subject_Params.csv, SkipRows=0)
    -> ReplaySubject Subject_Params(BufferSize=nil)

    StringProperty(Value=Sound_Duration) => #4
    StringProperty(Value=Stage) => #5
    StringProperty(Value=Go_Cue_Duration) => #6
    StringProperty(Value=Right_Valve_Time) => #7
    StringProperty(Value=Left_Valve_Time) => #8
    StringProperty(Value=Stim_Type) => #9
    StringProperty(Value=Stim_Range_Min) => #10
    StringProperty(Value=Stim_Range_Max) => #11
    StringProperty(Value=Nb_Of_Stim) => #12
    StringProperty(Value=Inter_Trial_Interval) => #13
    StringProperty(Value=Timeout_Duration) => #14
    StringProperty(Value=Response_Window) => #15
    StringProperty(Value=Anti_Bias) => #16
    StringProperty(Value=Air_Puff_Contingency_Rule) => #17
    StringProperty(Value=Visualiser_Window_Size) => #18
    StringProperty(Value=HARP_Beh_Port) => #19
    StringProperty(Value=Show_Contingency_Switches) => #20
    StringProperty(Value=Arduino) => #21
    StringProperty(Value=Speaker_Slope) => #22
    StringProperty(Value=Arduino_Nano_Port) => #23
    StringProperty(Value=Speaker_Y_Incercept) => #24
    StringProperty(Value=Data_Path) => #25
    StringProperty(Value=Protocol) => #26
    StringProperty(Value=Sound_Contingency) => #27
    StringProperty(Value=Emulator) => #28
    StringProperty(Value=Distribution_Exp_Rate) => #29
    StringProperty(Value=Sound_Air_Puff_Contingency) => #30
    StringProperty(Value=Distribution) => #31
    StringProperty(Value=Animal_ID) => #32
    StringProperty(Value=Room_ID) => #33
    StringProperty(Value=Rig_ID) => #34
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Sound_Duration => #36
      Script:
        param = 'Sound_Duration'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    Source2=#36 -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject Sound_Duration => #38
    #4, #38 -> CombineLatest => #39
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Stage => #41
      Script:
        param = 'Stage'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    Source2=#41 -> BehaviorSubject Stage => #42
    #5, #42 -> CombineLatest => #43
    SubscribeSubject Rig_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Right_Valve_Time => #45
      Script:
        param = 'Right_Valve_Time'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    Source2=#45 -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject Right_Valve_Time => #47
    #7, #47 -> CombineLatest => #48
    SubscribeSubject Rig_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Left_Valve_Time => #50
      Script:
        param = 'Left_Valve_Time'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    Source2=#50 -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject Left_Valve_Time => #52
    #8, #52 -> CombineLatest => #53
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Stim_Type => #55
      Script:
        param = 'Stim_Type'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    Source2=#55 -> BehaviorSubject Stim_Type => #56
    #9, #56 -> CombineLatest => #57
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Nb_Of_Stim
      Script:
        param = 'Nb_Of_Stim'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> PropertyMapping(Value)
    -> IntProperty(Value=8)
    -> BehaviorSubject Nb_Of_Stim => #62
    #12, #62 -> CombineLatest => #63
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Anti_Bias => #65
      Script:
        param = 'AntiBias'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> Equal(Operand=StringProperty(Value=True))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #68
    #65 -> Equal(Operand=StringProperty(Value=False))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #71
    #68, #71 -> Merge => #72
    Source2=#72 -> BehaviorSubject Anti_Bias => #73
    #16, #73 -> CombineLatest => #74
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Emulator => #76
      Script:
        param = 'Emulator'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> Equal(Operand=StringProperty(Value=True))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #79
    #76 -> Equal(Operand=StringProperty(Value=False))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #82
    #79, #82 -> Merge => #83
    Source2=#83 -> BehaviorSubject Emulator => #84
    #28, #84 -> CombineLatest => #85
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Air_Puff_Contingency_Rule => #87
      Script:
        param = 'Air_Puff_Contingency_Rule'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    Source2=#87 -> BehaviorSubject Air_Puff_Contingency_Rule => #88
    #17, #88 -> CombineLatest => #89
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Show_Contingency_Switches => #91
      Script:
        param = 'Show_Contingency_Switches'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> Equal(Operand=StringProperty(Value=True))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #94
    #91 -> Equal(Operand=StringProperty(Value=False))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #97
    #94, #97 -> Merge => #98
    Source2=#98 -> BehaviorSubject Show_Contingency_Switches => #99
    #20, #99 -> CombineLatest => #100
    SubscribeSubject Rig_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Arduino_Nano_Port => #102
      Script:
        param = 'Arduino_Port'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    Source2=#102 -> BehaviorSubject Arduino_Nano_Port => #103
    #23, #103 -> CombineLatest => #104
    SubscribeSubject Rig_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Speaker_Y_Incercept => #106
      Script:
        param = 'Speaker_Y_Intercept'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    Source2=#106 -> BehaviorSubject Speaker_Y_Incercept => #107
    #24, #107 -> CombineLatest => #108
    SubscribeSubject Rig_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Speaker_Slope => #110
      Script:
        param = 'Speaker_Slope'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    Source2=#110 -> BehaviorSubject Speaker_Slope => #111
    #22, #111 -> CombineLatest => #112
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Protocol => #114
      Script:
        param = 'Protocol'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    Source2=#114 -> BehaviorSubject Protocol => #115
    #26, #115 -> CombineLatest => #116
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Sound_Contingency => #118
      Script:
        param = 'Sound_Contingency'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    Source2=#118 -> BehaviorSubject Sound_Contingency => #119
    #27, #119 -> CombineLatest => #120
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Sound_Air_Puff_Contingency
      Script:
        param = 'Sound_Air_Puff_Contingency'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> PropertyMapping(Value)
    -> StringProperty(Value=Low_Pro_High_Anti)
    -> BehaviorSubject Sound_Air_Puff_Contingency => #125
    #30, #125 -> CombineLatest => #126
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Distribution => #128
      Script:
        param = 'Distribution'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    Source2=#128 -> BehaviorSubject Distribution => #129
    #31, #129 -> CombineLatest => #130
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Animal_ID => #132
      Script:
        param = 'Animal_ID'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    Source2=#132 -> BehaviorSubject Animal_ID => #133
    #32, #133 -> CombineLatest => #134
    ExternalizedMapping(Value(DisplayName=Data_Path))
    -> StringProperty(Value=../Data)
    -> BehaviorSubject Data_Path => #137
    #25, #137 -> CombineLatest => #138
    ExternalizedMapping(Value(DisplayName=Distribution_Exp_Rate))
    -> FloatProperty(Value=2.15329)
    -> BehaviorSubject Distribution_Exp_Rate => #141
    #29, #141 -> CombineLatest => #142
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Anti_Bias_Exp_Rate
      Script:
        param = 'AntiBias_Exp_Rate'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> BehaviorSubject Anti_Bias_Exp_Rate => #145
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Anti_Bias_Sigmoid_Slope
      Script:
        param = 'AntiBias_Sigmoid_Slope'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> BehaviorSubject Anti_Bias_Sigmoid_Slope_0 => #148
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Anti_Bias_Window
      Script:
        param = 'AntiBias_Window'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> PropertyMapping(Value)
    -> IntProperty(Value=30)
    -> BehaviorSubject Anti_Bias_Window => #153
    StringProperty(Value=Anti_Bias_Exp_Rate) => #154
    #154, #145 -> CombineLatest => #155
    StringProperty(Value=Anti_Bias_Window) => #156
    #156, #153 -> CombineLatest => #157
    StringProperty(Value=Anti_Bias_Sigmoid_Slope_0) => #158
    #158, #148 -> CombineLatest => #159
    SubscribeSubject Rig_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Room_ID => #161
      Script:
        param = 'Room_ID'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    Source2=#161 -> BehaviorSubject Room_ID => #162
    #33, #162 -> CombineLatest => #163
    SubscribeSubject Rig_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Rig_ID => #165
      Script:
        param = 'Rig_ID'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    Source2=#165 -> BehaviorSubject Rig_ID => #166
    #34, #166 -> CombineLatest => #167
    #130, #134, #163, #167, #155, #159, #157 -> CombineLatest => #168
    SubscribeSubject Rig_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Arduino => #170
      Script:
        param = 'Arduino'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> Equal(Operand=StringProperty(Value=True))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #173
    #170 -> Equal(Operand=StringProperty(Value=False))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #176
    #173, #176 -> Merge => #177
    Source2=#177 -> BehaviorSubject Arduino => #178
    #21, #178 -> CombineLatest => #179
    StringProperty(Value=Agent_Sim) => #180
    StringProperty(Value=Agent_Performance) => #181
    StringProperty(Value=Agent_Bias) => #182
    SubscribeSubject Rig_Params
    -> Bonsai.Scripting.IronPython.PythonTransform HARP_Beh_Port => #184
      Script:
        param = 'Harp_Beh_Port'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    Source2=#184 -> BehaviorSubject HARP_Beh_Port => #185
    #19, #185 -> CombineLatest => #186
    StringProperty(Value=Sound_Card_Port) => #187
    SubscribeSubject Rig_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Sound_Card_Port
      Script:
        param = 'Sound_Card_Port'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> BehaviorSubject Sound_Card_Port => #190
    #187, #190 -> CombineLatest => #191
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Opto_ON => #193
      Script:
        param = 'Opto_ON'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> Equal(Operand=StringProperty(Value=True))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #196
    #193 -> Equal(Operand=StringProperty(Value=False))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #199
    #196, #199 -> Merge
    -> BehaviorSubject Opto_ON => #201
    StringProperty(Value=Opto_ON) => #202
    #202, #201 -> CombineLatest => #203
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Perc_Opto_Trials
      Script:
        param = 'Perc_Opto_Trials'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> BehaviorSubject Perc_Opto_Trials => #206
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform "Light_Freq (Hz)"
      Script:
        param = 'Light_Freq (Hz)'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> BehaviorSubject Light_Freq => #209
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Opto_Offset_1
      Script:
        param = 'Opto_Offset_1'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> BehaviorSubject Opto_Offset_1 => #212
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Opto_Onset_1
      Script:
        param = 'Opto_Onset_1'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> BehaviorSubject Opto_Onset_1 => #215
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Stimulation_Type
      Script:
        param = 'Stimulation_Type'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> BehaviorSubject Stimulation_Type => #218
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Stimulation_Site
      Script:
        param = 'Stimulation_Site'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> BehaviorSubject Stimulation_Site => #221
    StringProperty(Value=Perc_Opto_Trials) => #222
    #222, #206 -> CombineLatest => #223
    StringProperty(Value=Light_Freq) => #224
    #224, #209 -> CombineLatest => #225
    StringProperty(Value=Opto_Offset_1) => #226
    #226, #212 -> CombineLatest => #227
    StringProperty(Value=Opto_Onset_1) => #228
    #228, #215 -> CombineLatest => #229
    StringProperty(Value=Stimulation_Type) => #230
    #230, #218 -> CombineLatest => #231
    StringProperty(Value=Stimulation_Site) => #232
    #232, #221 -> CombineLatest => #233
    SubscribeSubject Rig_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Arduino_Mega_Port
      Script:
        param = 'Arduino_Mega_Port'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> BehaviorSubject Arduino_Mega_Port => #236
    StringProperty(Value=Arduino_Mega_Port) => #237
    #237, #236 -> CombineLatest => #238
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Opto_Offset_2
      Script:
        param = 'Opto_Offset_2'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> BehaviorSubject Opto_Offset_2 => #241
    StringProperty(Value=Opto_Offset_2) => #242
    #242, #241 -> CombineLatest => #243
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Opto_Onset_2
      Script:
        param = 'Opto_Onset_2'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> BehaviorSubject Opto_Onset_2 => #246
    StringProperty(Value=Opto_Onset_2) => #247
    #247, #246 -> CombineLatest => #248
    #227, #229, #243, #248, #231, #233, #238 -> CombineLatest => #249
    StringProperty(Value=Stim_Dur_Staircase) => #250
    StringProperty(Value=Min_Sound_Duration) => #251
    StringProperty(Value=Stim_Dur_Staircase_Perf_Thresh) => #252
    StringProperty(Value=Stim_Dur_Staircase_Step) => #253
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Stim_Dur_Staircase => #255
      Script:
        param = 'Stim_Dur_Staircase'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> Equal(Operand=StringProperty(Value=True))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #258
    #255 -> Equal(Operand=StringProperty(Value=False))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #261
    #258, #261 -> Merge
    -> BehaviorSubject Stim_Dur_Staircase => #263
    #250, #263 -> CombineLatest => #264
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Min_Stim_Dur
      Script:
        param = 'Min_Stim_Dur'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject Min_Sound_Duration => #268
    #251, #268 -> CombineLatest => #269
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Stim_Dur_Staircase_Perf_Thresh
      Script:
        param = 'Stim_Dur_Staircase_Perf_Thresh'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> BehaviorSubject Stim_Dur_Staircase_Perf_Thresh => #272
    #252, #272 -> CombineLatest => #273
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Stim_Dur_Staircase_Step
      Script:
        param = 'Stim_Dur_Staircase_Step'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> BehaviorSubject Stim_Dur_Staircase_Step => #276
    #253, #276 -> CombineLatest => #277
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Agent_Sim => #279
      Script:
        param = 'Agent_Sim'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> Equal(Operand=StringProperty(Value=True))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #282
    #279 -> Equal(Operand=StringProperty(Value=False))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #285
    #282, #285 -> Merge
    -> BehaviorSubject Agent_Sim => #287
    #180, #287 -> CombineLatest => #288
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Agent_Performance
      Script:
        param = 'Agent_Performance'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> BehaviorSubject Agent_Performance => #291
    #181, #291 -> CombineLatest => #292
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Agent_Bias
      Script:
        param = 'Agent_Bias'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> BehaviorSubject Agent_Right_Bias => #295
    #182, #295 -> CombineLatest => #296
    #288, #292, #296, #191, #203, #223, #225 -> CombineLatest => #297
    StringProperty(Value=Opto_Type) => #298
    StringProperty(Value=Opto_Duration) => #299
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Opto_Duration
      Script:
        param = 'Opto_Duration'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> BehaviorSubject Opto_Duration => #302
    #299, #302 -> CombineLatest => #303
    StringProperty(Value=Zapit_Nb_Conditions) => #304
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Zapit_Nb_Conditions
      Script:
        param = 'Zapit_Nb_Conditions'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> PropertyMapping(Value)
    -> IntProperty(Value=1)
    -> BehaviorSubject Zapit_Nb_Conditions => #309
    #304, #309 -> CombineLatest => #310
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Opto_Type
      Script:
        param = 'Opto_Type'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> BehaviorSubject Opto_Type => #313
    #298, #313 -> CombineLatest => #314
    #264, #269, #273, #277, #314, #303, #310 -> CombineLatest => #315
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Inter_Trial_Interval
      Script:
        param = 'Inter_Trial_Interval'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromSeconds
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject Inter_Trial_Interval => #319
    #13, #319 -> CombineLatest => #320
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Timeout_Duration
      Script:
        param = 'Timeout_Duration'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromSeconds
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject Timeout_Duration => #324
    #14, #324 -> CombineLatest => #325
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Response_Window
      Script:
        param = 'Response_Window'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromSeconds
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject Response_Window => #329
    #15, #329 -> CombineLatest => #330
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Go_Cue_Dur
      Script:
        param = 'Go_Cue_Duration'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject Go_Cue_Dur => #334
    #6, #334 -> CombineLatest => #335
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Stim_Range_Min
      Script:
        param = 'Stim_Range_Min'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> BehaviorSubject Stim_Range_Min => #338
    #10, #338 -> CombineLatest => #339
    #39, #43, #335, #48, #53, #57, #339 -> CombineLatest => #340
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Stim_Range_Max
      Script:
        param = 'Stim_Range_Max'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> BehaviorSubject Stim_Range_Max => #343
    #11, #343 -> CombineLatest => #344
    #344, #63, #320, #325, #330, #74, #85 -> CombineLatest => #345
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Visualiser_Window_Size
      Script:
        param = 'Visualiser_Window_Size'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> PropertyMapping(Value)
    -> IntProperty(Value=30)
    -> BehaviorSubject Visualiser_Window_Size => #350
    #18, #350 -> CombineLatest => #351
    #89, #351, #100, #186, #179, #104, #108 -> CombineLatest => #352
    StringProperty(Value=Working_Memory_Type) => #353
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Working_Memory_Type
      Script:
        param = 'Working_Memory_Type'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> BehaviorSubject Working_Memory_Type => #356
    #353, #356 -> CombineLatest => #357
    #112, #138, #116, #120, #142, #126, #357 -> CombineLatest => #358
    #340, #345, #352, #358, #168, #297, #249 -> CombineLatest => #359
    StringProperty(Value=Stable_Start) => #360
    StringProperty(Value=Stable_Start_Window) => #361
    StringProperty(Value=Stable_Stim_Dist_Boundary) => #362
    StringProperty(Value=Max_Trials_Consec) => #363
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Stable_Start => #365
      Script:
        param = 'Stable_Start'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> Equal(Operand=StringProperty(Value=True))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #368
    #365 -> Equal(Operand=StringProperty(Value=False))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #371
    #368, #371 -> Merge
    -> BehaviorSubject Stable_Start => #373
    #360, #373 -> CombineLatest => #374
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Stable_Start_Window
      Script:
        param = 'Stable_Start_Window'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> PropertyMapping(Value)
    -> IntProperty(Value=20)
    -> BehaviorSubject Stable_Start_Window => #379
    #361, #379 -> CombineLatest => #380
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Stable_Stim_Dist_Boundary
      Script:
        param = 'Stable_Stim_Dist_Boundary'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> BehaviorSubject Stable_Stim_Dist_Boundary => #383
    #362, #383 -> CombineLatest => #384
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Max_Trials_Consec
      Script:
        param = 'Max_Trials_Consec'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> PropertyMapping(Value)
    -> IntProperty(Value=2)
    -> BehaviorSubject Max_Trials_Consec => #389
    #363, #389 -> CombineLatest => #390
    #374, #380, #384, #390 -> CombineLatest => #391
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Session_Type
      Script:
        param = 'Session_Type'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> BehaviorSubject Session_Type => #394
    StringProperty(Value=Session_Type) => #395
    #395, #394 -> CombineLatest => #396
    StringProperty(Value=Early_Lick_Abort) => #402
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Early_Lick_Abort => #404
      Script:
        param = 'Early_Lick_Abort'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> Equal(Operand=StringProperty(Value=True))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #407
    #404 -> Equal(Operand=StringProperty(Value=False))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #410
    #407, #410 -> Merge
    -> BehaviorSubject Early_Lick_Abort => #412
    #402, #412 -> CombineLatest => #413
    StringProperty(Value=Go_Cue_Sound) => #414
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Go_Cue_Sound => #416
      Script:
        param = 'Go_Cue_Sound'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> Equal(Operand=StringProperty(Value=True))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #419
    #416 -> Equal(Operand=StringProperty(Value=False))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #422
    #419, #422 -> Merge
    -> BehaviorSubject Go_Cue_Sound => #424
    #414, #424 -> CombineLatest => #425
    StringProperty(Value=Go_Cue_Freq) => #426
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Go_Cue_Freq
      Script:
        param = 'Go_Cue_Freq'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> BehaviorSubject Go_Cue_Freq => #429
    #426, #429 -> CombineLatest => #430
    StringProperty(Value=Go_Cue_Level) => #431
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Go_Cue_Level
      Script:
        param = 'Go_Cue_Level'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> BehaviorSubject Go_Cue_Level => #434
    #431, #434 -> CombineLatest => #435
    StringProperty(Value=Go_Cue_Sound_Duration) => #436
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Go_Cue_Sound_Duration => #438
      Script:
        param = 'Go_Cue_Sound_Duration'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    Source2=#438 -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject Go_Cue_Sound_Duration => #440
    #436, #440 -> CombineLatest => #441
    #413, #425, #430, #435, #441 -> CombineLatest => #442
    #359, #315, #391, #396, #442 -> CombineLatest
    -> BehaviorSubject Params
    -> Bonsai.Shaders.Delay(DueTime=PT4S)
    -> SelectMany Params_Loaded
        SubscribeSubject Circle
        -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0, LocationY=0, Layer=0, Diameter=1, ColorR=0.267441869, ColorG=1, ColorB=0.383720934, ColorA=1)
        -> IntProperty(Value=0) => #2
        SubscribeSubject Text
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawText.bonsai
          Text="Params Loaded"
          Font="Microsoft Sans Serif, 30pt"
          Alignment=Center
          LineAlignment=Center
          TextRenderingHint=AntiAliasGridFit
          Color(Val0=0, Val1=255, Val2=0, Val3=255)
          ExtentX=1
          ExtentY=1
          LocationX=0
          LocationY=0.6976744
          Layer=0
          Angle=0
        -> IntProperty(Value=0) => #5
        #2, #5 -> Merge
        -> Disable Take(Count=1)
        -> WorkflowOutput
    -> WorkflowOutput

GroupWorkflow Hardware
    Bonsai.Windows.Input.KeyDown(Filter=D1, SuppressRepetitions=false)
    -> Condition Emulator
        SubscribeSubject Emulator
        -> WorkflowOutput
    -> BooleanProperty(Value=false)
    -> MulticastSubject Beam_1_Bool
    -> BooleanProperty(Value=true)
    -> MulticastSubject Beam_1_Bool

    Bonsai.Windows.Input.KeyDown(Filter=D2, SuppressRepetitions=false)
    -> Condition Emulator
        SubscribeSubject Emulator
        -> WorkflowOutput
    -> BooleanProperty(Value=false)
    -> MulticastSubject Beam_2_Bool
    -> BooleanProperty(Value=true)
    -> MulticastSubject Beam_2_Bool

    SubscribeSubject Left_Valve => #12
    -> Condition True => #13
        WorkflowInput Source1
        -> WorkflowOutput
    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke1Valve) => #14
    #13 -> Bonsai.Scripting.Expressions.ExpressionTransform C => #15
      Expression: 'C'
    SubscribeSubject Right_Valve => #16
    -> Condition True => #17
        WorkflowInput Source1
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform A => #18
      Expression: 'A'
    #15, #18 -> Merge
    -> MulticastSubject Arduino_Command
    #12 -> Condition False
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve) => #22
    #17 -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve) => #23
    #16 -> Condition False
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve) => #25
    #14, #23, #22, #25 -> Merge
    -> MulticastSubject Beh_Module

    GroupWorkflow Camera
        Bonsai.Osc.CreateTcpServer(Name=Emitter, Port=1234, NoDelay=false, AllowNatTraversal=false)

        SubscribeSubject Video_File_Name
        -> PropertyMapping(FileName) => #2
        Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="") => #3
        SubscribeSubject Video_Timestamps_File_Name
        -> PropertyMapping(FileName) => #5
        SubscribeSubject Experiment_End
        -> Condition => #7
            WorkflowInput Source1
            -> WorkflowOutput
        SubscribeSubject Subscribe_Camera
        -> Condition => #9
            WorkflowInput Source1
            -> WorkflowOutput
        #3, #9 -> SubscribeWhen
        -> Retry => #11
        #11, #2 -> Bonsai.Vision.VideoWriter => #12
          FileName=../Data/TEST/SOUND_CAT_TEST_2024_4_17/Video_data.avi
          Suffix=Timestamp
          Buffered=true
          Overwrite=true
          FourCC=FMP4
          FrameRate=60
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor
        #12, #7 -> TakeUntil
        -> WorkflowOutput
        #11 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #16
        #16, #5 -> Bonsai.IO.TextWriter(FileName=../Data/TEST/SOUND_CAT_TEST_2024_4_17/Video_timestamps.txt, Suffix=Timestamp, Buffered=true, Overwrite=false, Append=false)
        #11 -> Bonsai.Dsp.ConvertToArray(Depth=nil)
        -> Bonsai.Osc.SendMessage(Connection=Emitter, Address=/tcpimage)
    -> WorkflowOutput

    SubscribeSubject HARP_Beh_Port
    -> PropertyMapping(PortName)
    -> GroupWorkflow HARP
        SubscribeSubject Subscribe_Beh_Board
        -> Condition => #1
            WorkflowInput Source1
            -> WorkflowOutput
        SubscribeSubject Beh_Module
        -> Skip(Count=1) => #3
        ExternalizedMapping(PortName) => #4
        #3, #4 -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM6) => #5
        #5, #1 -> SubscribeWhen => #6
        -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port1)
        -> MulticastSubject Beam_1_Bool
        #6 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port2)
        -> MulticastSubject Beam_2_Bool

    SubscribeSubject Sound_Card_Port
    -> PropertyMapping(PortName)
    -> GroupWorkflow Sound_Card
        SubscribeSubject Stim_Relative
        -> Condition WN
            SubscribeSubject Stim_Type => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=WN))
            -> WorkflowOutput
        -> SelectMany Map_To_Decibels
            WorkflowInput Source1
            -> Add(Operand=FloatProperty(Value=1)) => #1
            SubscribeSubject Stim_Range_Max => #2
            SubscribeSubject Stim_Range_Min
            -> PropertyMapping(Value) => #4
            #2, #4 -> Subtract(Operand=FloatProperty(Value=50))
            -> PropertyMapping(Value) => #6
            #1, #6 -> Multiply(Operand=FloatProperty(Value=32))
            -> Divide(Operand=FloatProperty(Value=2)) => #8
            SubscribeSubject Stim_Range_Min
            -> PropertyMapping(Value) => #10
            #8, #10 -> Add(Operand=FloatProperty(Value=50))
            -> MulticastSubject WN_Amplitude
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany Map_To_Bonsai
            SubscribeSubject Speaker_Y_Incercept => #0
            SubscribeSubject Speaker_Slope
            -> PropertyMapping(Value) => #2
            SubscribeSubject WN_Amplitude => #3
            #3, #0 -> Zip
            -> Subtract => #5
            #5, #2 -> Divide(Operand=DoubleProperty(Value=0.762))
            -> Take(Count=1)
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: (it-107.54)/-0.0764
        -> PropertyMapping(Value)
        -> IntProperty(Value=694) => #6
        -> SelectMany Left => #7
            WorkflowInput Source1
            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
            -> WorkflowOutput
        #6 -> SelectMany Right => #8
            WorkflowInput Source1
            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
            -> WorkflowOutput
        #7, #8 -> Zip
        -> SelectMany Play_WN => #10
            IntProperty(Value=3)
            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U16, Payload=0)
            -> Take(Count=1)
            -> WorkflowOutput
        SubscribeSubject Subscribe_Soundcard
        -> Condition => #12
            WorkflowInput Source1
            -> WorkflowOutput
        SubscribeSubject Sound_Duration
        -> PropertyMapping(DueTime) => #14
        #10, #14 -> Delay(DueTime=PT0.3S)
        -> SelectMany Stop_WN => #16
            IntProperty(Value=30)
            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U16, Payload=0) => #1
            -> Take(Count=1)
            -> WorkflowOutput
            #1 -> SelectMany Fire_Stim_Relative => #4
                SubscribeSubject Stim_Relative
                -> Bonsai.Scripting.IronPython.PythonTransform Float_To_Str
                  Script:
                    @returns(str)
                    def process(value):
                        return str(value)
                -> WorkflowOutput
            StringProperty(Value=Sound_Rel_End) => #5
            #4, #5 -> CombineLatest
            -> MulticastSubject Event_Log
        SubscribeSubject Experiment_End
        -> Condition => #20
            WorkflowInput Source1
            -> WorkflowOutput
        ExternalizedMapping(PortName) => #21
        SubscribeSubject Trial_Epoch
        -> Equal(Operand=StringProperty(Value=Response_Window))
        -> Condition => #28
            WorkflowInput Source1
            -> WorkflowOutput
        SubscribeSubject Go_Cue_Sound => #29
        #28, #29 -> CombineLatest
        -> MemberSelector(Selector=Item2)
        -> Condition => #32
            WorkflowInput Source1
            -> WorkflowOutput
        SubscribeSubject Go_Cue_Freq => #34
        SubscribeSubject Go_Cue_Level => #35
        SubscribeSubject Speaker_Y_Incercept => #36
        SubscribeSubject Speaker_Slope => #37
        #32, #34, #35, #36, #37 -> CombineLatest => #33
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: ((Item3 - Item4) / Item5 - 107.54) / -0.0764
        -> PropertyMapping(Value)
        -> IntProperty(Value=694) => #40
        -> SelectMany Go_Cue_Left => #41
            WorkflowInput Source1
            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
            -> WorkflowOutput
        #40 -> SelectMany Go_Cue_Right => #42
            WorkflowInput Source1
            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
            -> WorkflowOutput
        #33 -> MemberSelector(Selector=Item2)
        -> PropertyMapping(Value)
        -> IntProperty(Value=694) => #45
        #41, #42, #45 -> Zip
        -> MemberSelector(Selector=Item3)
        -> SelectMany Play_Go_Cue => #48
            WorkflowInput Source1
            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U16, Payload=0)
            -> WorkflowOutput
        SubscribeSubject Go_Cue_Sound_Duration
        -> PropertyMapping(DueTime) => #50
        #48, #50 -> Delay(DueTime=PT0.3S)
        -> SelectMany Stop_Go_Cue => #52
            IntProperty(Value=30)
            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U16, Payload=0)
            -> Take(Count=1)
            -> WorkflowOutput
        #7, #8, #16, #10, #41, #42, #48, #52 -> Merge
        -> Skip(Count=3) => #18
        #18, #21 -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM8) => #22
        #22, #12 -> SubscribeWhen => #23
        #23, #20 -> TakeUntil
        -> WorkflowOutput

    GroupWorkflow Arduino_Nano
        Bonsai.IO.SerialStringRead(PortName=ArduinoNano, NewLine=\n)
        -> BufferCount(Count=3, Skip=nil)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
          Expression:
            new(
            it[0] as ID,
            Convert.ToInt32(it[1]) == 1 as State,
            Convert.ToSingle(it[2]) as time
            )
        SubscribeSubject Arduino_Command
        -> Bonsai.IO.SerialStringWrite(PortName=ArduinoNano, NewLine=\n) => #4
        SubscribeSubject Subscribe_Nano
        -> Condition => #6
            WorkflowInput Source1
            -> WorkflowOutput
        SubscribeSubject Arduino_Nano_Port
        -> PropertyMapping(PortName)
        -> Bonsai.IO.CreateSerialPort => #9
          Name=ArduinoNano
          PortName=COM10
          BaudRate=9600
          Encoding=us-ascii
          Parity=None
          ParityReplace=63
          DataBits=8
          StopBits=One
          Handshake=None
          DiscardNull=false
          DtrEnable=true
          RtsEnable=false
          ReadBufferSize=4096
          WriteBufferSize=2048
          ReceivedBytesThreshold=1
        #9, #6 -> SubscribeWhen
        #2, #6 -> SubscribeWhen => #11
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=ID)
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(bool)
                def process(value):
                  return "Left input" in value
            -> WorkflowOutput
        -> MemberSelector(Selector=State)
        -> MulticastSubject Beam_1_Bool
        #11 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=ID)
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(bool)
                def process(value):
                  return "Right input" in value
            -> WorkflowOutput
        -> MemberSelector(Selector=State)
        -> MulticastSubject Beam_2_Bool
        #4, #6 -> SubscribeWhen

    GroupWorkflow Arduino_Mega
        SubscribeSubject Subscribe_Mega
        -> Condition => #1
            WorkflowInput Source1
            -> WorkflowOutput
        SubscribeSubject Arduino_Mega_Port
        -> PropertyMapping(PortName)
        -> Bonsai.IO.CreateSerialPort => #4
          Name=ArduinoMega
          PortName=COM4
          BaudRate=9600
          Encoding=us-ascii
          Parity=None
          ParityReplace=63
          DataBits=8
          StopBits=One
          Handshake=None
          DiscardNull=false
          DtrEnable=true
          RtsEnable=false
          ReadBufferSize=4096
          WriteBufferSize=2048
          ReceivedBytesThreshold=1
        #4, #1 -> SubscribeWhen

        SubscribeSubject Arduino_Mega_Command
        -> Bonsai.IO.SerialStringWrite(PortName=ArduinoMega, NewLine=\n) => #7
        SubscribeSubject Subscribe_Mega
        -> Condition => #9
            WorkflowInput Source1
            -> WorkflowOutput
        #7, #9 -> SubscribeWhen

GroupWorkflow UDP_Client
    Bonsai.Osc.CreateUdpClient(Name=End_Signal, Port=1334, RemoteHostName="", RemotePort=0)

    Bonsai.Osc.ReceiveMessage(Address=/GUI, TypeTag=s, Connection=End_Signal)
    -> Equal(Operand=StringProperty(Value=End_Protocol))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true)
    -> MulticastSubject Experiment_End

    Disable Bonsai.Windows.Input.KeyDown(Filter=Space, SuppressRepetitions=false)
    -> Disable Condition Emulator
        SubscribeSubject Emulator
        -> WorkflowOutput
    -> Disable BooleanProperty(Value=true)
    -> Disable MulticastSubject Experiment_End

GroupWorkflow File_Names
    IntProperty(Value=0)
    -> Timestamp => #1
    -> MemberSelector(Selector=Timestamp.DateTime.Year) => #2
    #1 -> MemberSelector(Selector=Timestamp.DateTime.Month) => #3
    #1 -> MemberSelector(Selector=Timestamp.Date.Day) => #4
    #2, #3, #4 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1.toString() + "_" + Item2.toString() + "_" + Item3.toString() as date
        )
    -> MemberSelector(Selector=date) => #7
    SubscribeSubject Subscribe_File_Names
    -> Condition => #9
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject Data_Path => #10
    SubscribeSubject Protocol => #11
    SubscribeSubject Animal_ID => #12
    #10, #11, #12, #7 -> Zip => #13
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Trial_Summary.csv" as Trial_Summary_File_Name
        )
    -> MemberSelector(Selector=Trial_Summary_File_Name)
    -> BehaviorSubject Trial_File_Name => #16
    #13 -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Detected_Licks.csv" as Licks_File_Name
        )
    -> MemberSelector(Selector=Licks_File_Name)
    -> BehaviorSubject Licks_File_Name => #19
    #13 -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Video_data.avi" as Video_File_Name
        )
    -> MemberSelector(Selector=Video_File_Name)
    -> BehaviorSubject Video_File_Name => #22
    #13 -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Video_timestamps.txt" as Video_Timestamps_File_Name
        )
    -> MemberSelector(Selector=Video_Timestamps_File_Name)
    -> BehaviorSubject Video_Timestamps_File_Name => #25
    #13 -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Long_Form_Timestamps.csv" as Long_Form_Timestamps_File_Name
        )
    -> MemberSelector(Selector=Long_Form_Timestamps_File_Name)
    -> BehaviorSubject Long_Form_Timestamps_File_Name => #28
    #13 -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Session_Parameters.csv" as Session_Parameters_File_Name
        )
    -> MemberSelector(Selector=Session_Parameters_File_Name)
    -> BehaviorSubject Session_Parameters_File_Name => #31
    #13 -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Trial_Epochs.csv" as Trial_Epochs_File_Name
        )
    -> MemberSelector(Selector=Trial_Epochs_File_Name)
    -> BehaviorSubject Trial_Epochs_File_Name => #34
    #13 -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Zapit_Timestamps.csv" as Zapit_Timestamps_File_Name
        )
    -> MemberSelector(Selector=Zapit_Timestamps_File_Name)
    -> BehaviorSubject Zapit_Timestamps_File_Name => #37
    #16, #19, #22, #25, #28, #31, #34, #37 -> Merge => #38
    #38, #9 -> SubscribeWhen

GroupWorkflow Param_Saving
    SubscribeSubject Params => #0
    SubscribeSubject Subscribe_Saving
    -> Condition => #2
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject Session_Parameters_File_Name
    -> PropertyMapping(FileName) => #4
    #0, #4 -> Bonsai.IO.CsvWriter => #5
      FileName=../Data/TEST/SOUND_CAT_TEST_2024_4_17/Session_Parameters.csv
      Delimiter=","
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true
    #5, #2 -> SubscribeWhen => #6
    SubscribeSubject Close_Files => #7
    #6, #7 -> TakeUntil

GroupWorkflow Long_Form_Saving
    SubscribeSubject Left_Valve
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Bonsai.Scripting.IronPython.PythonTransform To_Str => #2
      Script:
        @returns(str)
        def process(value):
            return str(value)
    StringProperty(Value=Left_Valve) => #3
    #3, #2 -> CombineLatest => #4
    SubscribeSubject Right_Valve
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Bonsai.Scripting.IronPython.PythonTransform To_Str => #7
      Script:
        @returns(str)
        def process(value):
            return str(value)
    StringProperty(Value=Right_Valve) => #8
    #8, #7 -> CombineLatest => #9
    SubscribeSubject First_Lick
    -> Bonsai.Scripting.IronPython.PythonTransform To_Str => #11
      Script:
        @returns(str)
        def process(value):
            return str(value)
    StringProperty(Value=First_Lick) => #12
    #12, #11 -> CombineLatest => #13
    SubscribeSubject Stim_Relative
    -> Bonsai.Scripting.IronPython.PythonTransform To_Str => #15
      Script:
        @returns(str)
        def process(value):
            return str(value)
    StringProperty(Value=Sound) => #16
    #16, #15 -> CombineLatest => #17
    #4, #9, #13, #17 -> Merge
    -> Timestamp => #19
    -> MemberSelector(Selector=Value) => #20
    #19 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #21
    #20, #21 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1.Item1 as Label,
        Item1.Item2 as Data,
        Item2 as Time
        )
    -> BehaviorSubject Hardware_Log => #24
    SubscribeSubject Subscribe_Saving
    -> Condition => #26
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject Long_Form_Timestamps_File_Name
    -> PropertyMapping(FileName) => #28
    #24, #28 -> Bonsai.IO.CsvWriter => #29
      FileName=../Data/TEST/SOUND_CAT_TEST_2024_4_17/Long_Form_Timestamps.csv
      Delimiter=","
      Append=true
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true
    #29, #26 -> SubscribeWhen => #30
    SubscribeSubject Trial_Epoch
    -> Timestamp => #32
    -> MemberSelector(Selector=Value) => #33
    #32 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #34
    #33, #34 -> Zip
    -> BehaviorSubject Trial_Epoch_Log
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #37
      Expression:
        new(
        Item1 as Epoch,
        Item2 as Time
        )
    SubscribeSubject Subscribe_Saving
    -> Condition => #39
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject Trial_Epochs_File_Name
    -> PropertyMapping(FileName) => #41
    #37, #41 -> Bonsai.IO.CsvWriter(FileName=../Data/TEST/SOUND_CAT_TEST_2024_4_17/Trial_Epochs.csv, Delimiter=",", Append=true, Overwrite=false, Suffix=Timestamp, IncludeHeader=true) => #42
    #42, #39 -> SubscribeWhen => #43
    SubscribeSubject Beam_1_Bool => #44
    -> Timestamp => #45
    -> MemberSelector(Selector=Value) => #46
    #45 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #47
    #44 -> StringProperty(Value=Beam1Bool) => #48
    #46, #47, #48 -> Zip => #49
    SubscribeSubject Beam_2_Bool => #50
    -> Timestamp => #51
    -> MemberSelector(Selector=Value) => #52
    #51 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #53
    #50 -> StringProperty(Value=Beam2Bool) => #54
    #52, #53, #54 -> Zip => #55
    #49, #55 -> Merge
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #57
      Expression:
        new(
        Item1 as State,
        Item2 as Time,
        Item3 as Spout
        )
    SubscribeSubject Licks_File_Name
    -> PropertyMapping(FileName) => #59
    #57, #59 -> Bonsai.IO.CsvWriter(FileName=../Data/TEST/SOUND_CAT_TEST_2024_4_17/Detected_Licks.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true) => #60
    SubscribeSubject Subscribe_Saving
    -> Condition => #62
        WorkflowInput Source1
        -> WorkflowOutput
    #60, #62 -> SubscribeWhen => #63
    SubscribeSubject Zapit_Byte_Tuple
    -> Bonsai.Scripting.IronPython.PythonTransform To_Str => #65
      Script:
        @returns(str)
        def process(value):
            return str(value)
    StringProperty(Value=Zapit_Byte_Tuple) => #66
    #66, #65 -> CombineLatest => #67
    SubscribeSubject Server_Message
    -> Bonsai.Scripting.IronPython.PythonTransform To_Str => #69
      Script:
        @returns(str)
        def process(value):
            return str(value)
    StringProperty(Value=Server_Message) => #70
    #70, #69 -> CombineLatest => #71
    SubscribeSubject Server_Reply
    -> Bonsai.Scripting.IronPython.PythonTransform To_Str => #73
      Script:
        @returns(str)
        def process(value):
            return str(value)
    StringProperty(Value=Server_Reply) => #74
    #74, #73 -> CombineLatest => #75
    #67, #71, #75 -> Merge
    -> Timestamp => #77
    -> MemberSelector(Selector=Value) => #78
    #77 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #79
    #78, #79 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #81
      Expression:
        new(
        Item1.Item1 as Label,
        Item1.Item2 as Data,
        Item2 as Time
        )
    SubscribeSubject Zapit_Timestamps_File_Name
    -> PropertyMapping(FileName) => #83
    #81, #83 -> Bonsai.IO.CsvWriter(FileName=../Data/TEST/SOUND_CAT_TEST_2024_4_17/Zapit_Timestamps.csv, Delimiter=",", Append=true, Overwrite=false, Suffix=Timestamp, IncludeHeader=true) => #84
    SubscribeSubject Subscribe_Saving
    -> Condition => #86
        WorkflowInput Source1
        -> WorkflowOutput
    #84, #86 -> SubscribeWhen => #87
    SubscribeSubject Close_Files => #88
    #30, #88 -> TakeUntil
    #43, #88 -> TakeUntil
    #63, #88 -> TakeUntil
    #87, #88 -> TakeUntil

GroupWorkflow Wide_Form_Saving
    SubscribeSubject Animal_ID => #0
    SubscribeSubject Protocol => #1
    SubscribeSubject Stage => #2
    SubscribeSubject Trial_Number => #3
    SubscribeSubject Correct_Count => #4
    SubscribeSubject Sound_Contingency => #5
    SubscribeSubject Stim_Relative => #6
    #0, #1, #2, #3, #4, #5, #6 -> CombineLatest => #7
    SubscribeSubject Correct => #8
    SubscribeSubject Abort_Trial => #9
    SubscribeSubject Reward_Side => #10
    SubscribeSubject First_Lick => #11
    SubscribeSubject Correct_Side => #12
    SubscribeSubject P_Right => #13
    SubscribeSubject Response_Latency => #14
    #8, #9, #10, #11, #12, #13, #14 -> CombineLatest => #15
    #7, #15 -> CombineLatest => #16
    SubscribeSubject Trial_Outcome => #17
    SubscribeSubject Inter_Trial_Interval => #18
    SubscribeSubject Sound_Duration => #19
    SubscribeSubject Go_Cue_Dur => #20
    SubscribeSubject Stim_Type => #21
    SubscribeSubject Stim_Range_Min => #22
    SubscribeSubject Stim_Range_Max => #23
    #17, #18, #19, #20, #21, #22, #23 -> CombineLatest => #24
    #16, #24 -> CombineLatest => #25
    SubscribeSubject Anti_Bias => #26
    SubscribeSubject Nb_Of_Stim => #27
    SubscribeSubject Response_Window => #28
    SubscribeSubject Timeout_Duration => #29
    SubscribeSubject Emulator => #30
    SubscribeSubject Distribution => #31
    SubscribeSubject Distribution_Exp_Rate => #32
    #26, #27, #28, #29, #30, #31, #32 -> CombineLatest => #33
    #25, #33 -> CombineLatest => #34
    SubscribeSubject Left_Valve_Time => #35
    SubscribeSubject Right_Valve_Time => #36
    SubscribeSubject Trial_End
    -> Condition => #38
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject Air_Puff_Contingency => #39
    SubscribeSubject Subscribe_Saving
    -> Condition => #41
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject Min_Block_Length => #42
    SubscribeSubject Window_Perf_Size => #43
    SubscribeSubject Block_Performance_Threshold => #44
    SubscribeSubject Trial_File_Name
    -> PropertyMapping(FileName) => #46
    SubscribeSubject Opto_ON => #47
    #35, #36, #39, #43, #42, #44, #47 -> CombineLatest => #48
    #34, #48 -> CombineLatest => #49
    SubscribeSubject Opto_Onset_1 => #50
    SubscribeSubject Opto_Offset_1 => #51
    SubscribeSubject Perc_Opto_Trials => #52
    SubscribeSubject Fiber => #53
    SubscribeSubject Mask => #54
    SubscribeSubject Air_Puff_Side => #55
    #54, #53, #52, #50, #51, #55 -> CombineLatest => #56
    #49, #56 -> CombineLatest => #57
    SubscribeSubject Opto_Onset_2 => #58
    SubscribeSubject Opto_Offset_2 => #59
    SubscribeSubject Zapit => #60
    SubscribeSubject Opto_Duration => #61
    SubscribeSubject Working_Memory_Delay => #62
    SubscribeSubject Air_Puff_Contingency_Rule => #63
    #58, #59, #60, #61, #62, #63 -> CombineLatest => #64
    SubscribeSubject Session_Type => #65
    SubscribeSubject Stimulation_Site => #66
    SubscribeSubject Stimulation_Type => #67
    SubscribeSubject Close_Files => #78
    SubscribeSubject Window_Open_Time => #81
    SubscribeSubject First_Lick_Time => #82
    SubscribeSubject Early_Lick_Time => #83
    #65, #66, #67, #81, #82, #83 -> CombineLatest => #68
    #57, #64, #68 -> CombineLatest => #69
    #69, #38 -> Sample
    -> Timestamp => #71
    -> MemberSelector(Selector=Value) => #72
    #71 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #73
    #72, #73 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #75
      Expression:
        new(
        Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1 as Animal_ID,
        Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as Protocol,
        Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item3 as Stage,
        Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item4 as Trial_Number,
        Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item5 as Correct_Count,
        Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item6 as Sound_Contingency,
        Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item7 as Stim_Relative,

        Item1.Item1.Item1.Item1.Item1.Item1.Item2.Item1 as Correct,
        Item1.Item1.Item1.Item1.Item1.Item1.Item2.Item2 as Abort_Trial,
        Item1.Item1.Item1.Item1.Item1.Item1.Item2.Item3 as Reward_Side,
        Item1.Item1.Item1.Item1.Item1.Item1.Item2.Item4 as First_Lick,
        Item1.Item1.Item1.Item1.Item1.Item1.Item2.Item5 as Correct_Side,
        Item1.Item1.Item1.Item1.Item1.Item1.Item2.Item6 as P_Right,
        (Item1.Item3.Item5 - Item1.Item3.Item4) * 1000 as Response_Latency,

        Item1.Item1.Item1.Item1.Item1.Item2.Item1 as Trial_Outcome,
        Item1.Item1.Item1.Item1.Item1.Item2.Item2 as Inter_Trial_Interval,
        Item1.Item1.Item1.Item1.Item1.Item2.Item3 as Sound_Duration,
        Item1.Item1.Item1.Item1.Item1.Item2.Item4 as Go_Cue_Duration,
        Item1.Item1.Item1.Item1.Item1.Item2.Item5 as Stim_Type,
        Item1.Item1.Item1.Item1.Item1.Item2.Item6 as Stim_Range_Min,
        Item1.Item1.Item1.Item1.Item1.Item2.Item7 as Stim_Range_Max,

        Item1.Item1.Item1.Item1.Item2.Item1 as Anti_Bias,
        Item1.Item1.Item1.Item1.Item2.Item2 as Nb_Of_Stim,
        Item1.Item1.Item1.Item1.Item2.Item3 as Response_Window,
        Item1.Item1.Item1.Item1.Item2.Item4 as Timeout_Duration,
        Item1.Item1.Item1.Item1.Item2.Item5 as Emulator,
        Item1.Item1.Item1.Item1.Item2.Item6 as Distribution,
        Item1.Item1.Item1.Item1.Item2.Item7 as Distribution_Exp_Rate,

        Item1.Item1.Item1.Item2.Item1 as Left_Valve_Time,
        Item1.Item1.Item1.Item2.Item2 as Right_Valve_Time,
        Item1.Item1.Item1.Item2.Item3 as Air_Puff_Contingency,
        Item1.Item1.Item1.Item2.Item4 as Window_Perf_Size,
        Item1.Item1.Item1.Item2.Item5 as Min_Block_Length,
        Item1.Item1.Item1.Item2.Item6 as Block_Performance_Threshold,
        Item1.Item1.Item1.Item2.Item7 as Opto_On,

        Item1.Item1.Item2.Item1 as Mask,
        Item1.Item1.Item2.Item2 as Fiber,
        Item1.Item1.Item2.Item3 as Perc_Opto_Trials,
        Item1.Item1.Item2.Item4 as Opto_Onset_1,
        Item1.Item1.Item2.Item5 as Opto_Offset_1,
        Item1.Item1.Item2.Item6 as Air_Puff_Side,

        Item1.Item2.Item1 as Opto_Onset_2,
        Item1.Item2.Item2 as Opto_Offset_2,
        Item1.Item2.Item3 as Zapit,
        Item1.Item2.Item4 as Opto_Duration,
        Item1.Item2.Item5 as Working_Memory_Delay,
        Item1.Item2.Item6 as Air_Puff_Contingency_Rule,


        Item1.Item3.Item1 as Session_Type,
        Item1.Item3.Item2 as Stimulation_Site,
        Item1.Item3.Item3 as Stimulation_Type,
        Item1.Item3.Item4 as Window_Open_Time,
        Item1.Item3.Item5 as First_Lick_Time,
        Item1.Item3.Item6 as Early_Lick_Time,

        Item2 as Trial_End_Time


        )
    #75, #46 -> Bonsai.IO.CsvWriter(FileName=../Data/TEST/SOUND_CAT_TEST_2024_4_17/Trial_Summary.csv, Delimiter=",", Append=true, Overwrite=false, Suffix=Timestamp, IncludeHeader=true) => #76
    #76, #41 -> SubscribeWhen => #77
    #77, #78 -> TakeUntil
    -> WorkflowOutput

GroupWorkflow Zapit_Client
    SubscribeSubject Server_Message
    -> zapit_TCPclient(tcp_port=1488, tcp_ip=127.0.0.1, buffer_size=16)
    -> SelectMany Parse_Server_Response
        WorkflowInput Source1
        -> SelectMany Write_Variables
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1)
            -> MulticastSubject Datetime_Double => #2
            #0 -> MemberSelector(Selector=Item2)
            -> MulticastSubject Message_Type_Byte => #4
            #0 -> MemberSelector(Selector=Item3) => #5
            #0 -> MemberSelector(Selector=Item4) => #6
            #5, #6 -> CombineLatest
            -> MulticastSubject Response_Byte_Tuple => #8
            #2, #4, #8 -> CombineLatest
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany Sanity_Checks
            SubscribeSubject Datetime_Double => #0
            -> Condition "if -1"
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=DoubleProperty(Value=-1))
                -> WorkflowOutput
            -> StringProperty(Value=Error) => #2
            #0 -> Condition "if 1"
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=DoubleProperty(Value=1))
                -> WorkflowOutput
            -> StringProperty(Value=Connected) => #4
            #0 -> Condition else
                WorkflowInput Source1 => #0
                -> NotEqual(Operand=DoubleProperty(Value=-1)) => #1
                #0 -> NotEqual(Operand=DoubleProperty(Value=1)) => #2
                #0 -> NotEqual(Operand=DoubleProperty(Value=-2)) => #3
                #1, #2, #3 -> CombineLatest
                -> LogicalAnd
                -> WorkflowOutput
            -> SelectMany Check_Match => #6
                SubscribeSubject Zapit_Byte_Tuple
                -> MemberSelector(Selector=Item1) => #1
                SubscribeSubject Message_Type_Byte => #2
                #1, #2 -> CombineLatest
                -> WorkflowOutput
            -> Condition Mismatch
                WorkflowInput Source1
                -> NotEqual
                -> WorkflowOutput
            -> StringProperty(Value=Mismatch) => #8
            #6 -> Condition Match
                WorkflowInput Source1
                -> Equal
                -> WorkflowOutput
            -> SelectMany Convert_Datetime => #10
                SubscribeSubject Datetime_Double
                -> Bonsai.Scripting.IronPython.PythonTransform
                  Script:
                    import datetime
                    @returns(str)
                    def process(value):
                       # Convert the datenum value to a Unix timestamp
                      unix_timestamp = (value - 719529) * 86400
                      # Create a datetime object from the Unix timestamp
                      datetime_str = datetime.datetime.fromtimestamp(unix_timestamp)
                      return str(datetime_str)
                -> WorkflowOutput
            #0 -> Condition "if -2"
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=DoubleProperty(Value=-2))
                -> WorkflowOutput
            -> StringProperty(Value=Disconnected) => #12
            #12, #2, #4, #8, #10 -> Merge => #13
            SubscribeSubject Response_Byte_Tuple => #14
            #13, #14 -> CombineLatest
            -> Take(Count=1)
            -> WorkflowOutput
        -> WorkflowOutput
    -> BehaviorSubject Server_Reply => #3
    SubscribeSubject Subscribe_Zapit
    -> Condition True => #5
        WorkflowInput Source1
        -> WorkflowOutput
    #3, #5 -> SubscribeWhen
    -> WorkflowOutput

    SubscribeSubject Subscribe_Zapit => #8
    -> Condition True
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany Connect
        IncludeWorkflow(Path=Extensions\basicMessage.bonsai, Trial_Command=255)
        -> WorkflowOutput
    -> Bonsai.Shaders.Delay(DueTime=PT2.5S)
    -> SelectMany Stim_Conf_Loaded? => #12
        IncludeWorkflow(Path=Extensions\basicMessage.bonsai, Trial_Command=2)
        -> WorkflowOutput
    -> Condition Yes
        SubscribeSubject Server_Reply
        -> MemberSelector(Selector=Item2.Item1) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=WorkflowProperty<System.Byte>(Value=1))
        -> WorkflowOutput
    -> SelectMany Get_Num_Conditions => #14
        IncludeWorkflow(Path=Extensions\basicMessage.bonsai, Trial_Command=4)
        -> WorkflowOutput
    -> Condition Match
        SubscribeSubject Server_Reply
        -> MemberSelector(Selector=Item2.Item1) => #1
        SubscribeSubject Zapit_Nb_Conditions => #2
        #1, #2 -> CombineLatest
        -> Equal
        -> WorkflowOutput
    #14 -> Condition Non_Match
        SubscribeSubject Server_Reply
        -> MemberSelector(Selector=Item2.Item1) => #1
        SubscribeSubject Zapit_Nb_Conditions => #2
        #1, #2 -> CombineLatest
        -> NotEqual
        -> WorkflowOutput
    -> SelectMany End_Experiment
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=Crash_Message)) => #1
        #0, #1 -> StringProperty(Value=Nb_Conditions_Non_Match)
        -> Bonsai.IO.WriteLine
        -> BooleanProperty(Value=true)
        -> MulticastSubject Experiment_End
        -> WorkflowOutput
    #12 -> Condition No
        SubscribeSubject Server_Reply
        -> MemberSelector(Selector=Item2.Item1) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=WorkflowProperty<System.Byte>(Value=0))
        -> WorkflowOutput
    -> SelectMany End_Experiment
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=Crash_Message)) => #1
        #0, #1 -> StringProperty(Value=No_Stim_Conf_Loaded)
        -> Bonsai.IO.WriteLine
        -> BooleanProperty(Value=true)
        -> MulticastSubject Experiment_End
        -> WorkflowOutput
    #8 -> Condition False
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> SelectMany Disconnect
        IncludeWorkflow(Path=Extensions\basicMessage.bonsai, Trial_Command=254)
        -> WorkflowOutput

SubscribeSubject Experiment_End
-> Condition => #12
    WorkflowInput Source1
    -> WorkflowOutput
-> SelectMany End_Processes
    WorkflowInput Source1
    -> SelectMany Valves_Closed
        WorkflowInput Source1 => #0
        -> BooleanProperty(Value=false)
        -> MulticastSubject Left_Valve => #2
        #0 -> BooleanProperty(Value=false)
        -> MulticastSubject Right_Valve => #4
        #2, #4 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Disconnect_Zapit
        IncludeWorkflow(Path=Extensions\basicMessage.bonsai, Trial_Command=254)
        -> WorkflowOutput
    -> SelectMany End_Opto
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.Expressions.ExpressionTransform Stop_Fiber
          Expression: 's'
        -> MulticastSubject Arduino_Mega_Command => #2
        #0 -> Bonsai.Scripting.Expressions.ExpressionTransform Stop_Mask
          Expression: 'k'
        -> MulticastSubject Arduino_Mega_Command => #4
        #0 -> SelectMany Stop_Optostim
            IncludeWorkflow(Path=Extensions\basicMessage.bonsai, Trial_Command=0)
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
          Expression: 'x'
        #2, #4, #6 -> Merge
        -> Disable Take(Count=1)
        -> WorkflowOutput
    -> WorkflowOutput
-> Bonsai.Shaders.Delay(DueTime=PT1S) => #14
SubscribeSubject Inter_Trial_Interval
-> PropertyMapping(DueTime)
-> Bonsai.Shaders.Timer(DueTime=PT2S)
-> SelectMany Prep_Trial
    WorkflowInput Source1
    -> SelectMany Write_Start_Trial
        WorkflowInput Source1
        -> BooleanProperty(Value=false)
        -> MulticastSubject Trial_End
        -> WorkflowOutput
    -> SelectMany Log_Trial_Start
        SubscribeSubject Trial_Number
        -> Bonsai.Scripting.IronPython.PythonTransform Int_To_Str
          Script:
            @returns(str)
            def process(value):
                return str(value)
        -> Take(Count=1) => #2
        StringProperty(Value=Trial_Start) => #3
        #3, #2 -> CombineLatest
        -> MulticastSubject Event_Log
        -> WorkflowOutput
    -> SelectMany Set_Spouts_Low => #3
        BooleanProperty(Value=true)
        -> MulticastSubject Beam_1_Bool => #1
        BooleanProperty(Value=true)
        -> MulticastSubject Beam_2_Bool => #3
        #1, #3 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> Condition No_Opto => #4
        SubscribeSubject Opto_ON
        -> BitwiseNot
        -> WorkflowOutput
    #3 -> Condition Opto => #5
        SubscribeSubject Opto_ON
        -> WorkflowOutput
    -> Condition Zapit
        SubscribeSubject Opto_Type => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=StringProperty(Value=Zapit))
        -> WorkflowOutput
    -> SelectMany Zapit_State? => #7
        IncludeWorkflow(Path=Extensions\basicMessage.bonsai, Trial_Command=255)
        -> SelectMany Wait_For_Response
            SubscribeSubject Server_Reply
            -> BooleanProperty(Value=true)
            -> Condition True
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        -> Disable BooleanProperty(Value=false)
        -> Take(Count=1)
        -> WorkflowOutput
    #5 -> Condition Fiber => #8
        SubscribeSubject Opto_Type => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=StringProperty(Value=Fiber))
        -> WorkflowOutput
    #4, #8, #7 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> SelectMany Trial
    SubscribeSubject Protocol => #0
    -> Condition Sound_Cat
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=StringProperty(Value=SOUND_CAT))
        -> WorkflowOutput
    -> SelectMany Sound_Cat_Trial => #2
        SubscribeSubject Stage => #0
        -> Condition Habituation
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Habituation))
            -> WorkflowOutput
        -> SelectMany Habituation => #2
            Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
            -> Bonsai.Numerics.Distributions.Sample
            -> Take(Count=1) => #2
            -> Condition Heads
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> SelectMany <0 => #4
                SubscribeSubject Sound_Duration
                -> PropertyMapping(DueTime) => #1
                ExternalizedMapping(Lower, Upper)
                -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-1, Upper=0)
                -> Bonsai.Numerics.Distributions.Sample
                -> MulticastSubject Stim_Relative => #5
                #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                -> Take(Count=1)
                -> WorkflowOutput
            SubscribeSubject Go_Cue_Dur => #5
            -> PropertyMapping(DueTime) => #6
            #4, #6 -> SelectMany Go_Cue => #7
                WorkflowInput Source1 => #0
                ExternalizedMapping(DueTime) => #1
                #0, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                -> WorkflowOutput
            -> Condition "Contingency - Low = L, High = R" => #8
                SubscribeSubject Sound_Contingency => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=StringProperty(Value=Low_Left_High_Right))
                -> WorkflowOutput
            #7 -> Condition "Contingency - Low = R, High = L" => #9
                SubscribeSubject Sound_Contingency => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=StringProperty(Value=Low_Right_High_Left))
                -> WorkflowOutput
            #2 -> Condition Tails
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> SelectMany >0 => #11
                SubscribeSubject Sound_Duration
                -> PropertyMapping(DueTime) => #1
                ExternalizedMapping(Lower, Upper)
                -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample
                -> MulticastSubject Stim_Relative => #5
                #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                -> Take(Count=1)
                -> WorkflowOutput
            #5 -> PropertyMapping(DueTime) => #12
            #11, #12 -> SelectMany Go_Cue => #13
                WorkflowInput Source1 => #0
                ExternalizedMapping(DueTime) => #1
                #0, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                -> WorkflowOutput
            -> Condition "Contingency - Low = R, High = L" => #14
                SubscribeSubject Sound_Contingency => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=StringProperty(Value=Low_Right_High_Left))
                -> WorkflowOutput
            #8, #14 -> Merge
            -> SelectMany Reward_Left => #16
                WorkflowInput Source1
                -> BooleanProperty(Value=true)
                -> MulticastSubject Left_Valve => #2
                SubscribeSubject Left_Valve_Time
                -> PropertyMapping(DueTime) => #4
                #2, #4 -> Bonsai.Shaders.Delay(DueTime=PT0.005S)
                -> BooleanProperty(Value=false)
                -> MulticastSubject Left_Valve => #7
                ExternalizedMapping(Value) => #8
                #7, #8 -> StringProperty(Value=Left)
                -> MulticastSubject Reward_Side
                -> WorkflowOutput
            #13 -> Condition "Contingency - Low = L, High = R" => #17
                SubscribeSubject Sound_Contingency => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=StringProperty(Value=Low_Left_High_Right))
                -> WorkflowOutput
            #9, #17 -> Merge
            -> SelectMany Reward_Right => #19
                WorkflowInput Source1
                -> BooleanProperty(Value=true)
                -> MulticastSubject Right_Valve => #2
                SubscribeSubject Right_Valve_Time
                -> PropertyMapping(DueTime) => #4
                #2, #4 -> Bonsai.Shaders.Delay(DueTime=PT0.005S)
                -> BooleanProperty(Value=false)
                -> MulticastSubject Right_Valve => #7
                ExternalizedMapping(Value) => #8
                #7, #8 -> StringProperty(Value=Right)
                -> MulticastSubject Reward_Side
                -> WorkflowOutput
            #16, #19 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Condition Lick_To_Release
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Lick_To_Release))
            -> WorkflowOutput
        -> SelectMany Lick_To_Release => #4
            SubscribeSubject Beam_1_Bool
            -> Condition False
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> StringProperty(Value=Left) => #2
            SubscribeSubject Beam_2_Bool
            -> Condition False
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> StringProperty(Value=Right) => #5
            #2, #5 -> Merge
            -> Take(Count=1)
            -> MulticastSubject First_Lick => #8
            -> Condition Left => #9
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=StringProperty(Value=Left))
                -> WorkflowOutput
            -> Condition "Contingency - Low = L, High = R"
                SubscribeSubject Sound_Contingency => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=StringProperty(Value=Low_Left_High_Right))
                -> WorkflowOutput
            -> SelectMany <0 => #11
                SubscribeSubject Sound_Duration
                -> PropertyMapping(DueTime) => #1
                ExternalizedMapping(Lower, Upper)
                -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-1, Upper=0)
                -> Bonsai.Numerics.Distributions.Sample
                -> MulticastSubject Stim_Relative => #5
                #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                -> Take(Count=1)
                -> WorkflowOutput
            #9 -> Condition "Contingency - Low = R, High = L"
                SubscribeSubject Sound_Contingency => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=StringProperty(Value=Low_Right_High_Left))
                -> WorkflowOutput
            -> SelectMany >0 => #13
                SubscribeSubject Sound_Duration
                -> PropertyMapping(DueTime) => #1
                ExternalizedMapping(Lower, Upper)
                -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample
                -> MulticastSubject Stim_Relative => #5
                #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                -> Take(Count=1)
                -> WorkflowOutput
            #11, #13 -> Merge => #14
            SubscribeSubject Go_Cue_Dur => #15
            -> PropertyMapping(DueTime) => #16
            #14, #16 -> SelectMany Go_Cue
                WorkflowInput Source1 => #0
                ExternalizedMapping(DueTime) => #1
                #0, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                -> WorkflowOutput
            -> SelectMany Reward_Left => #18
                WorkflowInput Source1
                -> BooleanProperty(Value=true)
                -> MulticastSubject Left_Valve => #2
                SubscribeSubject Left_Valve_Time
                -> PropertyMapping(DueTime) => #4
                #2, #4 -> Bonsai.Shaders.Delay(DueTime=PT0.05S)
                -> BooleanProperty(Value=false)
                -> MulticastSubject Left_Valve => #7
                ExternalizedMapping(Value) => #8
                #7, #8 -> StringProperty(Value=Left)
                -> MulticastSubject Reward_Side
                -> WorkflowOutput
            #8 -> Condition Right => #19
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=StringProperty(Value=Right))
                -> WorkflowOutput
            -> Condition "Contingency - Low = L, High = R"
                SubscribeSubject Sound_Contingency => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=StringProperty(Value=Low_Left_High_Right))
                -> WorkflowOutput
            -> SelectMany >0 => #21
                SubscribeSubject Sound_Duration
                -> PropertyMapping(DueTime) => #1
                ExternalizedMapping(Lower, Upper)
                -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample
                -> MulticastSubject Stim_Relative => #5
                #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                -> Take(Count=1)
                -> WorkflowOutput
            #19 -> Condition "Contingency - Low = R, High = L"
                SubscribeSubject Sound_Contingency => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=StringProperty(Value=Low_Right_High_Left))
                -> WorkflowOutput
            -> SelectMany <0 => #23
                SubscribeSubject Sound_Duration
                -> PropertyMapping(DueTime) => #1
                ExternalizedMapping(Lower, Upper)
                -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-1, Upper=0)
                -> Bonsai.Numerics.Distributions.Sample
                -> MulticastSubject Stim_Relative => #5
                #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                -> Take(Count=1)
                -> WorkflowOutput
            #21, #23 -> Merge => #24
            #15 -> PropertyMapping(DueTime) => #25
            #24, #25 -> SelectMany Go_Cue
                WorkflowInput Source1 => #0
                ExternalizedMapping(DueTime) => #1
                #0, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                -> WorkflowOutput
            -> SelectMany Reward_Right => #27
                WorkflowInput Source1
                -> BooleanProperty(Value=true)
                -> MulticastSubject Right_Valve => #2
                SubscribeSubject Right_Valve_Time
                -> PropertyMapping(DueTime) => #4
                #2, #4 -> Bonsai.Shaders.Delay(DueTime=PT0.05S)
                -> BooleanProperty(Value=false)
                -> MulticastSubject Right_Valve => #7
                ExternalizedMapping(Value) => #8
                #7, #8 -> StringProperty(Value=Right)
                -> MulticastSubject Reward_Side
                -> WorkflowOutput
            #18, #27 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Condition Three_And_Three
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Three_And_Three))
            -> WorkflowOutput
        -> SelectMany Three_And_Three => #6
            WorkflowInput Source1
            -> SelectMany Response
                SubscribeSubject Beam_1_Bool
                -> Skip(Count=1)
                -> Condition False
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> StringProperty(Value=Left) => #2
                SubscribeSubject Beam_2_Bool
                -> Skip(Count=1)
                -> Condition False
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> StringProperty(Value=Right) => #5
                #2, #5 -> Merge
                -> Take(Count=1)
                -> MulticastSubject First_Lick => #8
                SubscribeSubject Correct_Side => #9
                #8, #9 -> CombineLatest => #10
                -> Condition Equal
                    WorkflowInput Source1
                    -> Equal
                    -> WorkflowOutput
                -> Take(Count=1)
                -> BooleanProperty(Value=true)
                -> MulticastSubject Correct => #14
                #10 -> Condition Not_Equal
                    WorkflowInput Source1
                    -> NotEqual
                    -> WorkflowOutput
                -> Take(Count=1)
                -> BooleanProperty(Value=false)
                -> MulticastSubject Correct
                -> SelectMany Do_Nothing => #19
                    WorkflowInput Source1
                    -> StringProperty(Value=NaN)
                    -> MulticastSubject Reward_Side
                    -> WorkflowOutput
                #10 -> MemberSelector(Selector=Item1) => #20
                #14, #20 -> Zip
                -> MemberSelector(Selector=Item2) => #22
                -> Condition Left => #23
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Left))
                    -> WorkflowOutput
                -> Condition "Contingency - Low = L, High = R"
                    SubscribeSubject Sound_Contingency => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Low_Left_High_Right))
                    -> WorkflowOutput
                -> SelectMany <0 => #25
                    SubscribeSubject Sound_Duration
                    -> PropertyMapping(DueTime) => #1
                    ExternalizedMapping(Lower, Upper)
                    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-1, Upper=0)
                    -> Bonsai.Numerics.Distributions.Sample
                    -> MulticastSubject Stim_Relative => #5
                    #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                    -> Take(Count=1)
                    -> WorkflowOutput
                #23 -> Condition "Contingency - Low = R, High = L"
                    SubscribeSubject Sound_Contingency => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Low_Right_High_Left))
                    -> WorkflowOutput
                -> SelectMany >0 => #27
                    SubscribeSubject Sound_Duration
                    -> PropertyMapping(DueTime) => #1
                    ExternalizedMapping(Lower, Upper)
                    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                    -> Bonsai.Numerics.Distributions.Sample
                    -> MulticastSubject Stim_Relative => #5
                    #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                    -> Take(Count=1)
                    -> WorkflowOutput
                #25, #27 -> Merge => #28
                #22 -> Condition Right => #33
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Right))
                    -> WorkflowOutput
                -> Condition "Contingency - Low = L, High = R"
                    SubscribeSubject Sound_Contingency => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Low_Left_High_Right))
                    -> WorkflowOutput
                -> SelectMany >0 => #35
                    SubscribeSubject Sound_Duration
                    -> PropertyMapping(DueTime) => #1
                    ExternalizedMapping(Lower, Upper)
                    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                    -> Bonsai.Numerics.Distributions.Sample
                    -> MulticastSubject Stim_Relative => #5
                    #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                    -> Take(Count=1)
                    -> WorkflowOutput
                #33 -> Condition "Contingency - Low = R, High = L"
                    SubscribeSubject Sound_Contingency => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Low_Right_High_Left))
                    -> WorkflowOutput
                -> SelectMany <0 => #37
                    SubscribeSubject Sound_Duration
                    -> PropertyMapping(DueTime) => #1
                    ExternalizedMapping(Lower, Upper)
                    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-1, Upper=0)
                    -> Bonsai.Numerics.Distributions.Sample
                    -> MulticastSubject Stim_Relative => #5
                    #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                    -> Take(Count=1)
                    -> WorkflowOutput
                #35, #37 -> Merge => #38
                SubscribeSubject Go_Cue_Dur => #29
                -> PropertyMapping(DueTime) => #30
                #28, #30 -> SelectMany Go_Cue
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(DueTime) => #1
                    #0, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                    -> WorkflowOutput
                -> SelectMany Reward_Left => #32
                    WorkflowInput Source1
                    -> BooleanProperty(Value=true)
                    -> MulticastSubject Left_Valve => #2
                    SubscribeSubject Left_Valve_Time
                    -> PropertyMapping(DueTime) => #4
                    #2, #4 -> Bonsai.Shaders.Delay(DueTime=PT0.005S)
                    -> BooleanProperty(Value=false)
                    -> MulticastSubject Left_Valve => #7
                    ExternalizedMapping(Value) => #8
                    #7, #8 -> StringProperty(Value=Left)
                    -> MulticastSubject Reward_Side
                    -> WorkflowOutput
                #29 -> PropertyMapping(DueTime) => #39
                #38, #39 -> SelectMany Go_Cue
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(DueTime) => #1
                    #0, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                    -> WorkflowOutput
                -> SelectMany Reward_Right => #41
                    WorkflowInput Source1
                    -> BooleanProperty(Value=true)
                    -> MulticastSubject Right_Valve => #2
                    SubscribeSubject Right_Valve_Time
                    -> PropertyMapping(DueTime) => #4
                    #2, #4 -> Bonsai.Shaders.Delay(DueTime=PT0.005S)
                    -> BooleanProperty(Value=false)
                    -> MulticastSubject Right_Valve => #7
                    ExternalizedMapping(Value) => #8
                    #7, #8 -> StringProperty(Value=Right)
                    -> MulticastSubject Reward_Side
                    -> WorkflowOutput
                #32, #41 -> Merge => #42
                #42, #19 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany Set_Correct_Side
                SubscribeSubject Correct_Side => #0
                SubscribeSubject Correct => #1
                -> Condition Yes
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> IntProperty(Value=1) => #3
                #1 -> Condition No
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> IntProperty(Value=0) => #5
                #3, #5 -> Merge
                -> SelectMany Increment_Correct_Side
                    SubscribeSubject Correct_Side_Count => #0
                    WorkflowInput Source1 => #1
                    #1, #0 -> Zip
                    -> Add
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> MulticastSubject Correct_Side_Count => #8
                -> Bonsai.Scripting.IronPython.PythonTransform Multiple_Of_Three? => #9
                  Script:
                    @returns(bool)
                    def process(value):
                      if value%3 == 0:
                        result = True
                      else:
                        result = False
                      return result
                #8 -> NotEqual(Operand=IntProperty(Value=0)) => #10
                #9, #10 -> Zip
                -> LogicalAnd => #12
                -> Condition True
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> IntProperty(Value=0)
                -> MulticastSubject Correct_Side_Count => #15
                #15, #0 -> Zip
                -> Bonsai.Scripting.IronPython.PythonTransform Switch_Correct_Side
                  Script:
                    @returns(str)
                    def process(value):
                      correct_side = value[1]
                      if correct_side == 'Left':
                        result = 'Right'
                      else:
                        result = 'Left'
                      return result
                -> MulticastSubject Correct_Side => #18
                #12 -> Condition False
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> StringProperty(Value=NaN) => #20
                #18, #20 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Condition Full_Task_Disc
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Full_Task_Disc))
            -> WorkflowOutput
        -> SelectMany Full_Task_Disc => #8
            WorkflowInput Source1
            -> SelectMany Stim => #1
                SubscribeSubject P_Right => #0
                Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample => #2
                #2, #0 -> Zip => #3
                -> LessThan
                -> Condition => #5
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Condition "Contingency - Low = L, High = R"
                    SubscribeSubject Sound_Contingency => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Low_Left_High_Right))
                    -> WorkflowOutput
                -> SelectMany "> boundary" => #7
                    SubscribeSubject Nb_Of_Stim
                    -> Divide(Operand=IntProperty(Value=2))
                    -> PropertyMapping(Upper)
                    -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=4)
                    -> Bonsai.Numerics.Distributions.Sample
                    -> SelectMany Play
                        WorkflowInput Source1 => #0
                        -> Condition 4
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=4))
                            -> WorkflowOutput
                        -> SelectMany 0.25 => #2
                            SubscribeSubject Sound_Duration
                            -> PropertyMapping(DueTime) => #1
                            WorkflowInput Source1 => #2
                            ExternalizedMapping(Value) => #3
                            #2, #3 -> FloatProperty(Value=0.25)
                            -> MulticastSubject Stim_Relative => #5
                            #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #0 -> Condition 3
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=3))
                            -> WorkflowOutput
                        -> SelectMany 0.5 => #4
                            SubscribeSubject Sound_Duration
                            -> PropertyMapping(DueTime) => #1
                            WorkflowInput Source1 => #2
                            ExternalizedMapping(Value) => #3
                            #2, #3 -> FloatProperty(Value=0.5)
                            -> MulticastSubject Stim_Relative => #5
                            #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #0 -> Condition 2
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=2))
                            -> WorkflowOutput
                        -> SelectMany 0.75 => #6
                            SubscribeSubject Sound_Duration
                            -> PropertyMapping(DueTime) => #1
                            WorkflowInput Source1 => #2
                            ExternalizedMapping(Value) => #3
                            #2, #3 -> FloatProperty(Value=0.75)
                            -> MulticastSubject Stim_Relative => #5
                            #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.05S)
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #0 -> Condition 1
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=1))
                            -> WorkflowOutput
                        -> SelectMany 1 => #8
                            SubscribeSubject Sound_Duration
                            -> PropertyMapping(DueTime) => #1
                            WorkflowInput Source1 => #2
                            ExternalizedMapping(Value) => #3
                            #2, #3 -> FloatProperty(Value=1)
                            -> MulticastSubject Stim_Relative => #5
                            #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #2, #4, #6, #8 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> WorkflowOutput
                #5 -> Condition "Contingency - Low = R, High = L"
                    SubscribeSubject Sound_Contingency => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Low_Right_High_Left))
                    -> WorkflowOutput
                -> SelectMany "< boundary" => #9
                    SubscribeSubject Nb_Of_Stim
                    -> Divide(Operand=IntProperty(Value=2))
                    -> PropertyMapping(Upper)
                    -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=4)
                    -> Bonsai.Numerics.Distributions.Sample
                    -> SelectMany Play
                        WorkflowInput Source1 => #0
                        -> Condition 1
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=1))
                            -> WorkflowOutput
                        -> SelectMany -1 => #2
                            SubscribeSubject Sound_Duration
                            -> PropertyMapping(DueTime) => #1
                            WorkflowInput Source1 => #2
                            ExternalizedMapping(Value) => #3
                            #2, #3 -> FloatProperty(Value=-1)
                            -> MulticastSubject Stim_Relative => #5
                            #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.05S)
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #0 -> Condition 2
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=2))
                            -> WorkflowOutput
                        -> SelectMany -0.75 => #4
                            SubscribeSubject Sound_Duration
                            -> PropertyMapping(DueTime) => #1
                            WorkflowInput Source1 => #2
                            ExternalizedMapping(Value) => #3
                            #2, #3 -> FloatProperty(Value=-0.75)
                            -> MulticastSubject Stim_Relative => #5
                            #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.05S)
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #0 -> Condition 3
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=3))
                            -> WorkflowOutput
                        -> SelectMany -0.5 => #6
                            SubscribeSubject Sound_Duration
                            -> PropertyMapping(DueTime) => #1
                            WorkflowInput Source1 => #2
                            ExternalizedMapping(Value) => #3
                            #2, #3 -> FloatProperty(Value=-0.5)
                            -> MulticastSubject Stim_Relative => #5
                            #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.05S)
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #0 -> Condition 4
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=4))
                            -> WorkflowOutput
                        -> SelectMany -0.25 => #8
                            SubscribeSubject Sound_Duration
                            -> PropertyMapping(DueTime) => #1
                            WorkflowInput Source1 => #2
                            ExternalizedMapping(Value) => #3
                            #2, #3 -> FloatProperty(Value=-0.25)
                            -> MulticastSubject Stim_Relative => #5
                            #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.05S)
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #2, #4, #6, #8 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> WorkflowOutput
                #7, #9 -> Merge
                -> StringProperty(Value=Right) => #11
                #3 -> GreaterThanOrEqual
                -> Condition => #13
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Condition "Contingency - Low = L, High = R"
                    SubscribeSubject Sound_Contingency => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Low_Left_High_Right))
                    -> WorkflowOutput
                -> SelectMany "< boundary" => #15
                    SubscribeSubject Nb_Of_Stim
                    -> Divide(Operand=IntProperty(Value=2))
                    -> PropertyMapping(Upper)
                    -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=4)
                    -> Bonsai.Numerics.Distributions.Sample
                    -> SelectMany Play
                        WorkflowInput Source1 => #0
                        -> Condition 1
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=1))
                            -> WorkflowOutput
                        -> SelectMany -1 => #2
                            SubscribeSubject Sound_Duration
                            -> PropertyMapping(DueTime) => #1
                            WorkflowInput Source1 => #2
                            ExternalizedMapping(Value) => #3
                            #2, #3 -> FloatProperty(Value=-1)
                            -> MulticastSubject Stim_Relative => #5
                            #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #0 -> Condition 2
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=2))
                            -> WorkflowOutput
                        -> SelectMany -0.75 => #4
                            SubscribeSubject Sound_Duration
                            -> PropertyMapping(DueTime) => #1
                            WorkflowInput Source1 => #2
                            ExternalizedMapping(Value) => #3
                            #2, #3 -> FloatProperty(Value=-0.75)
                            -> MulticastSubject Stim_Relative => #5
                            #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.05S)
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #0 -> Condition 3
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=3))
                            -> WorkflowOutput
                        -> SelectMany -0.5 => #6
                            SubscribeSubject Sound_Duration
                            -> PropertyMapping(DueTime) => #1
                            WorkflowInput Source1 => #2
                            ExternalizedMapping(Value) => #3
                            #2, #3 -> FloatProperty(Value=-0.5)
                            -> MulticastSubject Stim_Relative => #5
                            #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #0 -> Condition 4
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=4))
                            -> WorkflowOutput
                        -> SelectMany -0.25 => #8
                            SubscribeSubject Sound_Duration
                            -> PropertyMapping(DueTime) => #1
                            WorkflowInput Source1 => #2
                            ExternalizedMapping(Value) => #3
                            #2, #3 -> FloatProperty(Value=-0.25)
                            -> MulticastSubject Stim_Relative => #5
                            #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.05S)
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #2, #4, #6, #8 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> WorkflowOutput
                #13 -> Condition "Contingency - Low = R, High = L"
                    SubscribeSubject Sound_Contingency => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Low_Right_High_Left))
                    -> WorkflowOutput
                -> SelectMany "> boundary" => #17
                    SubscribeSubject Nb_Of_Stim
                    -> Divide(Operand=IntProperty(Value=2))
                    -> PropertyMapping(Upper)
                    -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=4)
                    -> Bonsai.Numerics.Distributions.Sample
                    -> SelectMany Play
                        WorkflowInput Source1 => #0
                        -> Condition 4
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=4))
                            -> WorkflowOutput
                        -> SelectMany 0.25 => #2
                            SubscribeSubject Sound_Duration
                            -> PropertyMapping(DueTime) => #1
                            WorkflowInput Source1 => #2
                            ExternalizedMapping(Value) => #3
                            #2, #3 -> FloatProperty(Value=0.25)
                            -> MulticastSubject Stim_Relative => #5
                            #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.05S)
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #0 -> Condition 3
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=3))
                            -> WorkflowOutput
                        -> SelectMany 0.5 => #4
                            SubscribeSubject Sound_Duration
                            -> PropertyMapping(DueTime) => #1
                            WorkflowInput Source1 => #2
                            ExternalizedMapping(Value) => #3
                            #2, #3 -> FloatProperty(Value=0.5)
                            -> MulticastSubject Stim_Relative => #5
                            #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.05S)
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #0 -> Condition 2
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=2))
                            -> WorkflowOutput
                        -> SelectMany 0.75 => #6
                            SubscribeSubject Sound_Duration
                            -> PropertyMapping(DueTime) => #1
                            WorkflowInput Source1 => #2
                            ExternalizedMapping(Value) => #3
                            #2, #3 -> FloatProperty(Value=0.75)
                            -> MulticastSubject Stim_Relative => #5
                            #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.05S)
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #0 -> Condition 1
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=1))
                            -> WorkflowOutput
                        -> SelectMany 1 => #8
                            SubscribeSubject Sound_Duration
                            -> PropertyMapping(DueTime) => #1
                            WorkflowInput Source1 => #2
                            ExternalizedMapping(Value) => #3
                            #2, #3 -> FloatProperty(Value=1)
                            -> MulticastSubject Stim_Relative => #5
                            #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.05S)
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #2, #4, #6, #8 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> WorkflowOutput
                #15, #17 -> Merge
                -> StringProperty(Value=Left) => #19
                #11, #19 -> Merge
                -> MulticastSubject Correct_Side
                -> Take(Count=1)
                -> WorkflowOutput

                StringProperty(Value=Sound)
                -> MulticastSubject Trial_Epoch
            SubscribeSubject Response_Window
            -> PropertyMapping(DueTime) => #6
            SubscribeSubject Beam_1_Bool
            -> Skip(Count=1)
            -> Condition False => #28
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            SubscribeSubject Beam_2_Bool
            -> Skip(Count=1)
            -> Condition False => #31
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            #28, #31 -> Merge => #25
            SubscribeSubject Early_Lick_Abort => #37
            SubscribeSubject Trial_Epoch
            -> Equal(Operand=StringProperty(Value=Response_Window))
            -> Condition => #51
                WorkflowInput Source1
                -> WorkflowOutput
            #25, #51 -> TakeUntil
            -> Take(Count=1) => #33
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds)
            -> MulticastSubject Early_Lick_Time
            #33, #37 -> CombineLatest
            -> MemberSelector(Selector=Item2)
            -> Condition => #40
                WorkflowInput Source1
                -> WorkflowOutput
            #1, #40 -> TakeUntil
            -> SelectMany Go_Cue => #2
                WorkflowInput Source1 => #0
                SubscribeSubject Go_Cue_Dur
                -> PropertyMapping(DueTime) => #2
                #0, #2 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                -> WorkflowOutput

                StringProperty(Value=Go_Cue)
                -> MulticastSubject Trial_Epoch
            #2, #40 -> TakeUntil => #42
            -> SelectMany Response => #3
                SubscribeSubject Beam_1_Bool
                -> Skip(Count=1)
                -> Condition False
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> StringProperty(Value=Left) => #2
                SubscribeSubject Beam_2_Bool
                -> Skip(Count=1)
                -> Condition False
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> StringProperty(Value=Right) => #5
                #2, #5 -> Merge => #6
                SubscribeSubject Stim_Relative => #7
                -> LessThan(Operand=FloatProperty(Value=0)) => #8
                #7 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0)) => #9
                SubscribeSubject Agent_Sim
                -> Condition True
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany Decision => #12
                    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                    -> Bonsai.Numerics.Distributions.Sample => #1
                    SubscribeSubject Agent_Performance
                    -> PropertyMapping(Value) => #3
                    #1, #3 -> LessThan(Operand=DoubleProperty(Value=0.8)) => #4
                    -> Condition True
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> SelectMany Correct_Choice => #6
                        SubscribeSubject Stim_Relative => #0
                        -> LessThan(Operand=FloatProperty(Value=0)) => #1
                        SubscribeSubject Sound_Contingency => #2
                        -> Equal(Operand=StringProperty(Value=Low_Left_High_Right)) => #3
                        #1, #3 -> CombineLatest
                        -> LogicalAnd
                        -> Condition Low_Left => #6
                            WorkflowInput Source1
                            -> WorkflowOutput
                        #2 -> Equal(Operand=StringProperty(Value=Low_Right_High_Left)) => #7
                        #1, #7 -> CombineLatest
                        -> LogicalAnd
                        -> Condition Low_Right => #10
                            WorkflowInput Source1
                            -> WorkflowOutput
                        #0 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0)) => #11
                        #11, #3 -> CombineLatest
                        -> LogicalAnd
                        -> Condition High_Right => #14
                            WorkflowInput Source1
                            -> WorkflowOutput
                        #14, #10 -> Merge
                        -> StringProperty(Value=Right) => #16
                        #11, #7 -> CombineLatest
                        -> LogicalAnd
                        -> Condition High_Left => #19
                            WorkflowInput Source1
                            -> WorkflowOutput
                        #6, #19 -> Merge
                        -> StringProperty(Value=Left) => #21
                        #21, #16 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #4 -> Condition False
                        WorkflowInput Source1
                        -> BitwiseNot
                        -> WorkflowOutput
                    -> SelectMany Guess => #8
                        Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                        -> Bonsai.Numerics.Distributions.Sample => #1
                        SubscribeSubject Agent_Right_Bias
                        -> PropertyMapping(Value) => #3
                        #1, #3 -> LessThan(Operand=DoubleProperty(Value=0.5)) => #4
                        -> Condition True
                            WorkflowInput Source1
                            -> WorkflowOutput
                        -> StringProperty(Value=Right) => #6
                        #4 -> Condition False
                            WorkflowInput Source1
                            -> BitwiseNot
                            -> WorkflowOutput
                        -> StringProperty(Value=Left) => #8
                        #6, #8 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #6, #8 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #6, #12 -> Merge
                -> Take(Count=1)
                -> MulticastSubject First_Lick => #15
                -> Equal(Operand=StringProperty(Value=Left)) => #16
                #16, #8 -> Zip
                -> LogicalAnd
                -> Condition Low_Left => #19
                    WorkflowInput Source1
                    -> WorkflowOutput
                #16, #9 -> Zip
                -> LogicalAnd
                -> Condition High_Left => #22
                    WorkflowInput Source1
                    -> WorkflowOutput
                #15 -> Equal(Operand=StringProperty(Value=Right)) => #23
                #23, #9 -> Zip
                -> LogicalAnd
                -> Condition High_Right => #26
                    WorkflowInput Source1
                    -> WorkflowOutput
                #19, #26 -> Merge => #27
                -> Condition "Contingency - Low = L, High = R" => #28
                    SubscribeSubject Sound_Contingency => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Low_Left_High_Right))
                    -> WorkflowOutput
                #27 -> Condition "Contingency - Low = R, High = L" => #29
                    SubscribeSubject Sound_Contingency => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Low_Right_High_Left))
                    -> WorkflowOutput
                #23, #8 -> Zip
                -> LogicalAnd
                -> Condition Low_Right => #32
                    WorkflowInput Source1
                    -> WorkflowOutput
                #22, #32 -> Merge => #33
                -> Condition "Contingency - Low = L, High = R" => #34
                    SubscribeSubject Sound_Contingency => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Low_Left_High_Right))
                    -> WorkflowOutput
                #29, #34 -> Merge
                -> BooleanProperty(Value=false) => #36
                #33 -> Condition "Contingency - Low = R, High = L" => #37
                    SubscribeSubject Sound_Contingency => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Low_Right_High_Left))
                    -> WorkflowOutput
                #28, #37 -> Merge
                -> BooleanProperty(Value=true) => #39
                #39, #36 -> Merge
                -> Take(Count=1)
                -> MulticastSubject Correct
                -> WorkflowOutput

                StringProperty(Value=Response_Window)
                -> MulticastSubject Trial_Epoch
            -> BooleanProperty(Value=false) => #4
            #42, #3 -> GroupWorkflow Record_Latency
                SubscribeSubject Trial_End
                -> Condition => #1
                    WorkflowInput Source1
                    -> WorkflowOutput
                WorkflowInput Source1 => #2
                -> SelectMany Start_Timer => #3
                    Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.001S)
                    -> WorkflowOutput
                WorkflowInput Source2 => #4
                #1, #4 -> Merge => #5
                #3, #5 -> TakeUntil
                -> MulticastSubject Response_Latency
                -> WorkflowOutput
                #2 -> Timestamp
                -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds)
                -> MulticastSubject Window_Open_Time
                #4 -> Timestamp
                -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds)
                -> MulticastSubject First_Lick_Time
            #42, #6 -> Delay(DueTime=PT10S)
            -> BooleanProperty(Value=true) => #8
            #4, #8 -> Merge
            -> Take(Count=1)
            -> MulticastSubject Abort_Trial => #11
            -> Condition Response
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> SelectMany Feedback => #13
                SubscribeSubject Correct => #0
                -> Condition Yes
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany Success
                    SubscribeSubject First_Lick => #0
                    -> Condition Left
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Left))
                        -> WorkflowOutput
                    -> SelectMany Reward_Left => #2
                        WorkflowInput Source1
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject Left_Valve => #2
                        SubscribeSubject Left_Valve_Time
                        -> PropertyMapping(DueTime) => #4
                        #2, #4 -> Bonsai.Shaders.Delay(DueTime=PT0.005S)
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject Left_Valve => #7
                        ExternalizedMapping(Value) => #8
                        #7, #8 -> StringProperty(Value=Left)
                        -> MulticastSubject Reward_Side
                        -> WorkflowOutput
                    #0 -> Condition Right
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Right))
                        -> WorkflowOutput
                    -> SelectMany Reward_Right => #4
                        WorkflowInput Source1
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject Right_Valve => #2
                        SubscribeSubject Right_Valve_Time
                        -> PropertyMapping(DueTime) => #4
                        #2, #4 -> Bonsai.Shaders.Delay(DueTime=PT0.005S)
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject Right_Valve => #7
                        ExternalizedMapping(Value) => #8
                        #7, #8 -> StringProperty(Value=Right)
                        -> MulticastSubject Reward_Side
                        -> WorkflowOutput
                    #2, #4 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput

                    StringProperty(Value=Reward)
                    -> MulticastSubject Trial_Epoch
                -> StringProperty(Value=Correct) => #3
                #0 -> Condition No
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> SelectMany Failure
                    WorkflowInput Source1 => #0
                    SubscribeSubject Timeout_Duration
                    -> PropertyMapping(DueTime) => #2
                    #0, #2 -> Bonsai.Shaders.Delay(DueTime=PT3S)
                    -> WorkflowOutput

                    StringProperty(Value=Timeout)
                    -> MulticastSubject Trial_Epoch
                -> StringProperty(Value=Incorrect) => #6
                #3, #6 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput

                StringProperty(Value=Feedback)
                -> MulticastSubject Trial_Epoch
            #11 -> Condition Abort
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=Abort) => #15
            #40 -> StringProperty(Value=Feedback)
            -> MulticastSubject Trial_Epoch
            -> SelectMany Early_Timeout
                WorkflowInput Source1 => #0
                SubscribeSubject Timeout_Duration
                -> PropertyMapping(DueTime) => #2
                #0, #2 -> Bonsai.Shaders.Delay(DueTime=PT5S)
                -> WorkflowOutput

                StringProperty(Value=Timeout)
                -> MulticastSubject Trial_Epoch
            -> StringProperty(Value=Early) => #46
            #13, #15, #46 -> Merge
            -> Take(Count=1)
            -> MulticastSubject Trial_Outcome
            -> WorkflowOutput
            #40 -> BooleanProperty(Value=true)
            -> MulticastSubject Abort_Trial

            DoubleProperty(Value=NaN) => #21
            -> MulticastSubject Window_Open_Time
            #21 -> MulticastSubject First_Lick_Time
            #21 -> MulticastSubject Early_Lick_Time
        #0 -> Condition Full_Task_Cont
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Full_Task_Cont))
            -> WorkflowOutput
        -> SelectMany Full_Task_Cont => #10
            WorkflowInput Source1
            -> SelectMany Stim => #1
                SubscribeSubject Stable_Start => #0
                -> Condition False => #1
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                #0 -> Condition True => #2
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Condition "< Max_Trial_Consec"
                    SubscribeSubject Trial_Number => #0
                    Disable SubscribeSubject Max_Trials_Consec
                    -> Disable PropertyMapping(Value) => #2
                    #0, #2 -> Disable LessThan(Operand=IntProperty(Value=3)) => #3
                    SubscribeSubject Max_Trials_Consec
                    -> PropertyMapping(Value) => #5
                    #3, #5 -> LessThanOrEqual(Operand=IntProperty(Value=2))
                    -> WorkflowOutput
                -> SelectMany Gen_Rand_Easy => #4
                    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                    -> Bonsai.Numerics.Distributions.Sample => #1
                    FloatProperty(Value=0.5) => #2
                    #1, #2 -> Zip => #3
                    -> LessThan
                    -> Condition True => #5
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Condition "Contingency - Low = L, High = R"
                        SubscribeSubject Sound_Contingency => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Low_Left_High_Right))
                        -> WorkflowOutput
                    -> SelectMany "> boundary" => #7
                        SubscribeSubject Stable_Stim_Dist_Boundary
                        -> PropertyMapping(Lower) => #1
                        ExternalizedMapping(Upper) => #2
                        #1, #2 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0.8, Upper=1)
                        -> Bonsai.Numerics.Distributions.Sample
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #5 -> Condition "Contingency - Low = R, High = L"
                        SubscribeSubject Sound_Contingency => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Low_Right_High_Left))
                        -> WorkflowOutput
                    -> SelectMany "< boundary" => #9
                        SubscribeSubject Stable_Stim_Dist_Boundary
                        -> Multiply(Operand=FloatProperty(Value=-1))
                        -> PropertyMapping(Upper) => #2
                        ExternalizedMapping(Lower) => #3
                        #2, #3 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-1, Upper=-0.800000011920929)
                        -> Bonsai.Numerics.Distributions.Sample
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #7, #9 -> Merge => #10
                    -> IntProperty(Value=1) => #11
                    #3 -> GreaterThanOrEqual
                    -> Condition True => #13
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Condition "Contingency - Low = L, High = R"
                        SubscribeSubject Sound_Contingency => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Low_Left_High_Right))
                        -> WorkflowOutput
                    -> SelectMany "< boundary" => #15
                        SubscribeSubject Stable_Stim_Dist_Boundary
                        -> Multiply(Operand=FloatProperty(Value=-1))
                        -> PropertyMapping(Upper) => #2
                        ExternalizedMapping(Lower) => #3
                        #2, #3 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-1, Upper=-0.8)
                        -> Bonsai.Numerics.Distributions.Sample
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #13 -> Condition "Contingency - Low = R, High = L"
                        SubscribeSubject Sound_Contingency => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Low_Right_High_Left))
                        -> WorkflowOutput
                    -> SelectMany "> boundary" => #17
                        SubscribeSubject Stable_Stim_Dist_Boundary
                        -> PropertyMapping(Lower) => #1
                        ExternalizedMapping(Upper) => #2
                        #1, #2 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0.800000011920929, Upper=1)
                        -> Bonsai.Numerics.Distributions.Sample
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #15, #17 -> Merge => #18
                    #10, #18 -> Merge
                    -> SelectMany Play
                        SubscribeSubject Sound_Duration
                        -> PropertyMapping(DueTime) => #1
                        WorkflowInput Source1
                        -> PropertyMapping(Value)
                        -> FloatProperty(Value=0.9684901)
                        -> MulticastSubject Stim_Relative => #5
                        #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> WorkflowOutput
                    #18 -> IntProperty(Value=0) => #23
                    #11, #23 -> Merge
                    -> Take(Count=1)
                    -> MulticastSubject Trial_Side
                #2 -> Condition Stable_Range
                    SubscribeSubject Trial_Number => #0
                    SubscribeSubject Stable_Start_Window
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=20)) => #3
                    SubscribeSubject Max_Trials_Consec
                    -> PropertyMapping(Value) => #5
                    #0, #5 -> GreaterThan(Operand=IntProperty(Value=2)) => #6
                    #3, #6 -> Zip
                    -> BitwiseAnd
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> SelectMany Bias_Correct => #6
                    SubscribeSubject History_Buffer
                    -> Take(Count=1)
                    -> Disable Bonsai.Shaders.Delay(DueTime=PT1.5S) => #2
                    -> Condition Recent_Left => #3
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=DoubleProperty(Value=0))
                        -> WorkflowOutput
                    #2 -> Condition Recent_Right => #4
                        WorkflowInput Source1 => #0
                        SubscribeSubject Max_Trials_Consec
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> Equal(Operand=DoubleProperty(Value=2))
                        -> WorkflowOutput
                    #2 -> Condition Other
                        WorkflowInput Source1 => #0
                        SubscribeSubject Max_Trials_Consec
                        -> PropertyMapping(Value) => #2
                        ExternalizedMapping(Value) => #3
                        #0, #3 -> NotEqual(Operand=DoubleProperty(Value=0)) => #4
                        #0, #2 -> NotEqual(Operand=DoubleProperty(Value=2)) => #5
                        #4, #5 -> Zip
                        -> BitwiseAnd
                        -> WorkflowOutput
                    -> SelectMany Cont_Unif => #6
                        Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                        -> Bonsai.Numerics.Distributions.Sample => #1
                        FloatProperty(Value=0.5) => #2
                        #1, #2 -> Zip
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> Condition Heads
                        WorkflowInput Source1
                        -> LessThan
                        -> WorkflowOutput
                    -> IntProperty(Value=0) => #8
                    #3, #8 -> Merge => #9
                    -> Condition "Contingency - Low = L, High = R"
                        SubscribeSubject Sound_Contingency => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Low_Left_High_Right))
                        -> WorkflowOutput
                    -> SelectMany "> boundary" => #11
                        SubscribeSubject Stable_Stim_Dist_Boundary
                        -> PropertyMapping(Lower) => #1
                        ExternalizedMapping(Upper) => #2
                        #1, #2 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0.8, Upper=1)
                        -> Bonsai.Numerics.Distributions.Sample
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #9 -> Condition "Contingency - Low = R, High = L"
                        SubscribeSubject Sound_Contingency => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Low_Right_High_Left))
                        -> WorkflowOutput
                    -> SelectMany "< boundary" => #13
                        SubscribeSubject Stable_Stim_Dist_Boundary
                        -> Multiply(Operand=FloatProperty(Value=-1))
                        -> PropertyMapping(Upper) => #2
                        ExternalizedMapping(Lower) => #3
                        #2, #3 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-1, Upper=-0.800000011920929)
                        -> Bonsai.Numerics.Distributions.Sample
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #11, #13 -> Merge => #14
                    -> IntProperty(Value=1) => #15
                    #6 -> Condition Tails
                        WorkflowInput Source1
                        -> GreaterThanOrEqual
                        -> WorkflowOutput
                    -> IntProperty(Value=0) => #17
                    #17, #4 -> Merge => #18
                    -> Condition "Contingency - Low = L, High = R"
                        SubscribeSubject Sound_Contingency => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Low_Left_High_Right))
                        -> WorkflowOutput
                    -> SelectMany "< boundary" => #20
                        SubscribeSubject Stable_Stim_Dist_Boundary
                        -> Multiply(Operand=FloatProperty(Value=-1))
                        -> PropertyMapping(Upper) => #2
                        ExternalizedMapping(Lower) => #3
                        #2, #3 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-1, Upper=-0.8)
                        -> Bonsai.Numerics.Distributions.Sample
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #18 -> Condition "Contingency - Low = R, High = L"
                        SubscribeSubject Sound_Contingency => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Low_Right_High_Left))
                        -> WorkflowOutput
                    -> SelectMany "> boundary" => #22
                        SubscribeSubject Stable_Stim_Dist_Boundary
                        -> PropertyMapping(Lower) => #1
                        ExternalizedMapping(Upper) => #2
                        #1, #2 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0.800000011920929, Upper=1)
                        -> Bonsai.Numerics.Distributions.Sample
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #20, #22 -> Merge => #23
                    #14, #23 -> Merge
                    -> SelectMany Play
                        SubscribeSubject Sound_Duration
                        -> PropertyMapping(DueTime) => #1
                        WorkflowInput Source1
                        -> PropertyMapping(Value)
                        -> FloatProperty(Value=0.9045849)
                        -> MulticastSubject Stim_Relative => #5
                        #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> WorkflowOutput
                    #23 -> IntProperty(Value=0) => #28
                    #15, #28 -> Merge
                    -> Take(Count=1)
                    -> MulticastSubject Trial_Side
                #2 -> Condition "> Stable_Range" => #7
                    SubscribeSubject Trial_Number => #0
                    SubscribeSubject Stable_Start_Window
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThanOrEqual(Operand=IntProperty(Value=20))
                    -> WorkflowOutput
                #7, #1 -> Merge
                -> SelectMany Normal_Stim => #9
                    SubscribeSubject Distribution => #0
                    -> Condition Uniform?
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Uniform))
                        -> WorkflowOutput
                    -> SelectMany Unif => #2
                        SubscribeSubject P_Right => #0
                        Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                        -> Bonsai.Numerics.Distributions.Sample => #2
                        #2, #0 -> Zip => #3
                        -> LessThan
                        -> Condition True => #5
                            WorkflowInput Source1
                            -> WorkflowOutput
                        -> Condition "Contingency - Low = L, High = R"
                            SubscribeSubject Sound_Contingency => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=StringProperty(Value=Low_Left_High_Right))
                            -> WorkflowOutput
                        -> SelectMany "> boundary" => #7
                            ExternalizedMapping(Lower, Upper)
                            -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                            -> Bonsai.Numerics.Distributions.Sample
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #5 -> Condition "Contingency - Low = R, High = L"
                            SubscribeSubject Sound_Contingency => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=StringProperty(Value=Low_Right_High_Left))
                            -> WorkflowOutput
                        -> SelectMany "< boundary" => #9
                            ExternalizedMapping(Lower, Upper)
                            -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-1, Upper=0)
                            -> Bonsai.Numerics.Distributions.Sample
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #7, #9 -> Merge => #10
                        -> StringProperty(Value=Right) => #11
                        #3 -> GreaterThanOrEqual
                        -> Condition True => #13
                            WorkflowInput Source1
                            -> WorkflowOutput
                        -> Condition "Contingency - Low = L, High = R"
                            SubscribeSubject Sound_Contingency => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=StringProperty(Value=Low_Left_High_Right))
                            -> WorkflowOutput
                        -> SelectMany "< boundary" => #15
                            ExternalizedMapping(Lower, Upper)
                            -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-1, Upper=0)
                            -> Bonsai.Numerics.Distributions.Sample
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #13 -> Condition "Contingency - Low = R, High = L"
                            SubscribeSubject Sound_Contingency => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=StringProperty(Value=Low_Right_High_Left))
                            -> WorkflowOutput
                        -> SelectMany "> boundary" => #17
                            ExternalizedMapping(Lower, Upper)
                            -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                            -> Bonsai.Numerics.Distributions.Sample
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #15, #17 -> Merge => #18
                        #10, #18 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                        #18 -> StringProperty(Value=Left) => #22
                        #11, #22 -> Merge
                        -> MulticastSubject Correct_Side
                    #0 -> Condition Asym_Left?
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Asym_Left))
                        -> WorkflowOutput
                    -> SelectMany Coin_Flip => #4
                        ExternalizedMapping(Lower, Upper)
                        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                        -> Bonsai.Numerics.Distributions.Sample
                        -> WorkflowOutput
                    -> Condition "< P_Right" => #5
                        WorkflowInput Source1 => #0
                        SubscribeSubject P_Right
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> LessThan(Operand=DoubleProperty(Value=0.5))
                        -> WorkflowOutput
                    -> Condition "Contingency - Low = L, High = R"
                        SubscribeSubject Sound_Contingency => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Low_Left_High_Right))
                        -> WorkflowOutput
                    -> SelectMany Asym => #7
                        ExternalizedMapping(Upper) => #0
                        Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.001S)
                        -> SelectMany Exp => #2
                            SubscribeSubject Distribution_Exp_Rate
                            -> PropertyMapping(Rate)
                            -> Bonsai.Numerics.Distributions.CreateExponential(Rate=2.1532900333404541)
                            -> Bonsai.Numerics.Distributions.Sample
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #2, #0 -> Condition "<1 ?"
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value(DisplayName=Upper)) => #1
                            #0, #1 -> LessThanOrEqual(Operand=DoubleProperty(Value=1))
                            -> WorkflowOutput
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #5 -> Condition "Contingency - Low = R, High = L"
                        SubscribeSubject Sound_Contingency => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Low_Right_High_Left))
                        -> WorkflowOutput
                    -> SelectMany Unif => #9
                        ExternalizedMapping(Lower, Upper)
                        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-1, Upper=0)
                        -> Bonsai.Numerics.Distributions.Sample
                        -> WorkflowOutput
                    #7, #9 -> Merge => #10
                    #4 -> Condition "> P_Right" => #11
                        WorkflowInput Source1 => #0
                        SubscribeSubject P_Right
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0.5))
                        -> WorkflowOutput
                    -> Condition "Contingency - Low = L, High = R"
                        SubscribeSubject Sound_Contingency => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Low_Left_High_Right))
                        -> WorkflowOutput
                    -> SelectMany Unif => #13
                        ExternalizedMapping(Lower, Upper)
                        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-1, Upper=0)
                        -> Bonsai.Numerics.Distributions.Sample
                        -> WorkflowOutput
                    #11 -> Condition "Contingency - Low = R, High = L"
                        SubscribeSubject Sound_Contingency => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Low_Right_High_Left))
                        -> WorkflowOutput
                    -> SelectMany Asym => #15
                        ExternalizedMapping(Upper) => #0
                        Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.001S)
                        -> SelectMany Exp => #2
                            SubscribeSubject Distribution_Exp_Rate
                            -> PropertyMapping(Rate)
                            -> Bonsai.Numerics.Distributions.CreateExponential(Rate=2.15329)
                            -> Bonsai.Numerics.Distributions.Sample
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #2, #0 -> Condition "<1 ?"
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value(DisplayName=Upper)) => #1
                            #0, #1 -> LessThanOrEqual(Operand=DoubleProperty(Value=1))
                            -> WorkflowOutput
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #13, #15 -> Merge => #16
                    #10, #16 -> Merge => #17
                    #0 -> Condition Asym_Right?
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Asym_Right))
                        -> WorkflowOutput
                    -> SelectMany Coin_Flip => #19
                        ExternalizedMapping(Lower, Upper)
                        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                        -> Bonsai.Numerics.Distributions.Sample
                        -> WorkflowOutput
                    -> Condition "> P_Right" => #20
                        WorkflowInput Source1 => #0
                        SubscribeSubject P_Right
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0.5))
                        -> WorkflowOutput
                    -> Condition "Contingency - Low = L, High = R"
                        SubscribeSubject Sound_Contingency => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Low_Left_High_Right))
                        -> WorkflowOutput
                    -> SelectMany Asym => #22
                        ExternalizedMapping(Lower) => #0
                        Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.001S)
                        -> SelectMany Exp => #2
                            SubscribeSubject Distribution_Exp_Rate
                            -> PropertyMapping(Rate)
                            -> Bonsai.Numerics.Distributions.CreateExponential(Rate=2.1532900333404541)
                            -> Bonsai.Numerics.Distributions.Sample
                            -> Multiply(Operand=DoubleProperty(Value=-1))
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #2, #0 -> Condition ">-1 ?"
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value(DisplayName=Lower)) => #1
                            #0, #1 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=-1))
                            -> WorkflowOutput
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #20 -> Condition "Contingency - Low = R, High = L"
                        SubscribeSubject Sound_Contingency => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Low_Right_High_Left))
                        -> WorkflowOutput
                    -> SelectMany Unif => #24
                        ExternalizedMapping(Lower, Upper)
                        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                        -> Bonsai.Numerics.Distributions.Sample
                        -> WorkflowOutput
                    #22, #24 -> Merge => #25
                    #11, #20 -> Merge
                    -> StringProperty(Value=Left) => #27
                    #19 -> Condition "< P_Right" => #28
                        WorkflowInput Source1 => #0
                        SubscribeSubject P_Right
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> LessThan(Operand=DoubleProperty(Value=0.5))
                        -> WorkflowOutput
                    -> Condition "Contingency - Low = L, High = R"
                        SubscribeSubject Sound_Contingency => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Low_Left_High_Right))
                        -> WorkflowOutput
                    -> SelectMany Unif => #30
                        ExternalizedMapping(Lower, Upper)
                        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                        -> Bonsai.Numerics.Distributions.Sample
                        -> WorkflowOutput
                    #28 -> Condition "Contingency - Low = R, High = L"
                        SubscribeSubject Sound_Contingency => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Low_Right_High_Left))
                        -> WorkflowOutput
                    -> SelectMany Asym => #32
                        ExternalizedMapping(Lower) => #0
                        Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.001S)
                        -> SelectMany Exp => #2
                            SubscribeSubject Distribution_Exp_Rate
                            -> PropertyMapping(Rate)
                            -> Bonsai.Numerics.Distributions.CreateExponential(Rate=2.1532900333404541)
                            -> Bonsai.Numerics.Distributions.Sample
                            -> Multiply(Operand=DoubleProperty(Value=-1))
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #2, #0 -> Condition ">-1 ?"
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value(DisplayName=Lower)) => #1
                            #0, #1 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=-1))
                            -> WorkflowOutput
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #30, #32 -> Merge => #33
                    #25, #33 -> Merge => #34
                    #2, #17, #34 -> Merge
                    -> SelectMany Play
                        SubscribeSubject Sound_Duration
                        -> PropertyMapping(DueTime) => #1
                        WorkflowInput Source1
                        -> PropertyMapping(Value)
                        -> FloatProperty(Value=-0.266605049)
                        -> MulticastSubject Stim_Relative => #5
                        #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> Take(Count=1) => #37
                    #5, #28 -> Merge
                    -> StringProperty(Value=Right) => #39
                    #39, #27 -> Merge
                    -> MulticastSubject Correct_Side
                    #37 -> Take(Count=1)
                    -> WorkflowOutput
                #4, #6, #9 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput

                StringProperty(Value=Sound)
                -> MulticastSubject Trial_Epoch
            SubscribeSubject Response_Window
            -> PropertyMapping(DueTime) => #6
            SubscribeSubject Beam_1_Bool
            -> Skip(Count=1)
            -> Condition False => #28
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            SubscribeSubject Beam_2_Bool
            -> Skip(Count=1)
            -> Condition False => #31
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            #28, #31 -> Merge => #25
            SubscribeSubject Early_Lick_Abort => #37
            SubscribeSubject Trial_Epoch
            -> Equal(Operand=StringProperty(Value=Response_Window))
            -> Condition => #51
                WorkflowInput Source1
                -> WorkflowOutput
            #25, #51 -> TakeUntil
            -> Take(Count=1) => #33
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds)
            -> MulticastSubject Early_Lick_Time
            #33, #37 -> CombineLatest
            -> MemberSelector(Selector=Item2)
            -> Condition => #40
                WorkflowInput Source1
                -> WorkflowOutput
            #1, #40 -> TakeUntil
            -> SelectMany Go_Cue => #2
                WorkflowInput Source1 => #0
                SubscribeSubject Go_Cue_Dur
                -> PropertyMapping(DueTime) => #2
                #0, #2 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                -> WorkflowOutput

                StringProperty(Value=Go_Cue)
                -> MulticastSubject Trial_Epoch
            #2, #40 -> TakeUntil => #42
            -> SelectMany Response => #3
                SubscribeSubject Beam_1_Bool
                -> Skip(Count=1)
                -> Condition False
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> StringProperty(Value=Left) => #2
                SubscribeSubject Beam_2_Bool
                -> Skip(Count=1)
                -> Condition False
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> StringProperty(Value=Right) => #5
                #2, #5 -> Merge => #6
                SubscribeSubject Stim_Relative => #7
                -> LessThan(Operand=FloatProperty(Value=0)) => #8
                #7 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0)) => #9
                SubscribeSubject Agent_Sim
                -> Condition True
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany Decision => #12
                    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                    -> Bonsai.Numerics.Distributions.Sample => #1
                    SubscribeSubject Agent_Performance
                    -> PropertyMapping(Value) => #3
                    #1, #3 -> LessThan(Operand=DoubleProperty(Value=0.8)) => #4
                    -> Condition True
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> SelectMany Correct_Choice => #6
                        SubscribeSubject Stim_Relative => #0
                        -> LessThan(Operand=FloatProperty(Value=0)) => #1
                        SubscribeSubject Sound_Contingency => #2
                        -> Equal(Operand=StringProperty(Value=Low_Left_High_Right)) => #3
                        #1, #3 -> CombineLatest
                        -> LogicalAnd
                        -> Condition Low_Left => #6
                            WorkflowInput Source1
                            -> WorkflowOutput
                        #2 -> Equal(Operand=StringProperty(Value=Low_Right_High_Left)) => #7
                        #1, #7 -> CombineLatest
                        -> LogicalAnd
                        -> Condition Low_Right => #10
                            WorkflowInput Source1
                            -> WorkflowOutput
                        #0 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0)) => #11
                        #11, #3 -> CombineLatest
                        -> LogicalAnd
                        -> Condition High_Right => #14
                            WorkflowInput Source1
                            -> WorkflowOutput
                        #14, #10 -> Merge
                        -> StringProperty(Value=Right) => #16
                        #11, #7 -> CombineLatest
                        -> LogicalAnd
                        -> Condition High_Left => #19
                            WorkflowInput Source1
                            -> WorkflowOutput
                        #6, #19 -> Merge
                        -> StringProperty(Value=Left) => #21
                        #21, #16 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #4 -> Condition False
                        WorkflowInput Source1
                        -> BitwiseNot
                        -> WorkflowOutput
                    -> SelectMany Guess => #8
                        Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                        -> Bonsai.Numerics.Distributions.Sample => #1
                        SubscribeSubject Agent_Right_Bias
                        -> PropertyMapping(Value) => #3
                        #1, #3 -> LessThan(Operand=DoubleProperty(Value=0.5)) => #4
                        -> Condition True
                            WorkflowInput Source1
                            -> WorkflowOutput
                        -> StringProperty(Value=Right) => #6
                        #4 -> Condition False
                            WorkflowInput Source1
                            -> BitwiseNot
                            -> WorkflowOutput
                        -> StringProperty(Value=Left) => #8
                        #6, #8 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #6, #8 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #6, #12 -> Merge
                -> Take(Count=1)
                -> MulticastSubject First_Lick => #15
                -> Equal(Operand=StringProperty(Value=Left)) => #16
                #16, #8 -> Zip
                -> LogicalAnd
                -> Condition Low_Left => #19
                    WorkflowInput Source1
                    -> WorkflowOutput
                #16, #9 -> Zip
                -> LogicalAnd
                -> Condition High_Left => #22
                    WorkflowInput Source1
                    -> WorkflowOutput
                #15 -> Equal(Operand=StringProperty(Value=Right)) => #23
                #23, #9 -> Zip
                -> LogicalAnd
                -> Condition High_Right => #26
                    WorkflowInput Source1
                    -> WorkflowOutput
                #19, #26 -> Merge => #27
                -> Condition "Contingency - Low = L, High = R" => #28
                    SubscribeSubject Sound_Contingency => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Low_Left_High_Right))
                    -> WorkflowOutput
                #27 -> Condition "Contingency - Low = R, High = L" => #29
                    SubscribeSubject Sound_Contingency => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Low_Right_High_Left))
                    -> WorkflowOutput
                #23, #8 -> Zip
                -> LogicalAnd
                -> Condition Low_Right => #32
                    WorkflowInput Source1
                    -> WorkflowOutput
                #22, #32 -> Merge => #33
                -> Condition "Contingency - Low = L, High = R" => #34
                    SubscribeSubject Sound_Contingency => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Low_Left_High_Right))
                    -> WorkflowOutput
                #29, #34 -> Merge
                -> BooleanProperty(Value=false) => #36
                #33 -> Condition "Contingency - Low = R, High = L" => #37
                    SubscribeSubject Sound_Contingency => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Low_Right_High_Left))
                    -> WorkflowOutput
                #28, #37 -> Merge
                -> BooleanProperty(Value=true) => #39
                #39, #36 -> Merge
                -> Take(Count=1)
                -> MulticastSubject Correct
                -> WorkflowOutput

                StringProperty(Value=Response_Window)
                -> MulticastSubject Trial_Epoch
            -> BooleanProperty(Value=false) => #4
            #42, #3 -> GroupWorkflow Record_Latency
                SubscribeSubject Trial_End
                -> Condition => #1
                    WorkflowInput Source1
                    -> WorkflowOutput
                WorkflowInput Source1 => #2
                -> SelectMany Start_Timer => #3
                    Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.001S)
                    -> WorkflowOutput
                WorkflowInput Source2 => #4
                #1, #4 -> Merge => #5
                #3, #5 -> TakeUntil
                -> TakeLast(Count=1)
                -> MulticastSubject Response_Latency
                -> WorkflowOutput
                #2 -> Timestamp
                -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds)
                -> MulticastSubject Window_Open_Time
                #4 -> Timestamp
                -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds)
                -> MulticastSubject First_Lick_Time
            #42, #6 -> Delay(DueTime=PT10S)
            -> BooleanProperty(Value=true) => #8
            #4, #8 -> Merge
            -> Take(Count=1)
            -> MulticastSubject Abort_Trial => #11
            -> Condition Response
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> SelectMany Feedback => #13
                SubscribeSubject Correct => #0
                -> Condition Yes
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany Success
                    SubscribeSubject First_Lick => #0
                    -> Condition Left
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Left))
                        -> WorkflowOutput
                    -> SelectMany Reward_Left => #2
                        WorkflowInput Source1
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject Left_Valve => #2
                        SubscribeSubject Left_Valve_Time
                        -> PropertyMapping(DueTime) => #4
                        #2, #4 -> Bonsai.Shaders.Delay(DueTime=PT0.048S)
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject Left_Valve => #7
                        ExternalizedMapping(Value) => #8
                        #7, #8 -> StringProperty(Value=Left)
                        -> MulticastSubject Reward_Side
                        -> WorkflowOutput
                    #0 -> Condition Right
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Right))
                        -> WorkflowOutput
                    -> SelectMany Reward_Right => #4
                        WorkflowInput Source1
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject Right_Valve => #2
                        SubscribeSubject Right_Valve_Time
                        -> PropertyMapping(DueTime) => #4
                        #2, #4 -> Bonsai.Shaders.Delay(DueTime=PT0.048S)
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject Right_Valve => #7
                        ExternalizedMapping(Value) => #8
                        #7, #8 -> StringProperty(Value=Right)
                        -> MulticastSubject Reward_Side
                        -> WorkflowOutput
                    #2, #4 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput

                    StringProperty(Value=Reward)
                    -> MulticastSubject Trial_Epoch
                -> StringProperty(Value=Correct) => #3
                #0 -> Condition No
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> SelectMany Failure
                    WorkflowInput Source1 => #0
                    SubscribeSubject Timeout_Duration
                    -> PropertyMapping(DueTime) => #2
                    #0, #2 -> Bonsai.Shaders.Delay(DueTime=PT5S)
                    -> WorkflowOutput

                    StringProperty(Value=Timeout)
                    -> MulticastSubject Trial_Epoch
                -> StringProperty(Value=Incorrect) => #6
                #3, #6 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput

                StringProperty(Value=Feedback)
                -> MulticastSubject Trial_Epoch
            #11 -> Condition Abort
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=Abort) => #15
            #40 -> StringProperty(Value=Feedback)
            -> MulticastSubject Trial_Epoch
            -> SelectMany Early_Timeout
                WorkflowInput Source1 => #0
                SubscribeSubject Timeout_Duration
                -> PropertyMapping(DueTime) => #2
                #0, #2 -> Bonsai.Shaders.Delay(DueTime=PT5S)
                -> WorkflowOutput

                StringProperty(Value=Timeout)
                -> MulticastSubject Trial_Epoch
            -> StringProperty(Value=Early) => #46
            #13, #15, #46 -> Merge
            -> Take(Count=1)
            -> MulticastSubject Trial_Outcome
            -> WorkflowOutput
            #40 -> BooleanProperty(Value=true)
            -> MulticastSubject Abort_Trial

            DoubleProperty(Value=NaN) => #21
            -> MulticastSubject Window_Open_Time
            #21 -> MulticastSubject First_Lick_Time
            #21 -> MulticastSubject Early_Lick_Time
        #2, #4, #6, #8, #10 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    #0 -> Condition Pro_Anti
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=StringProperty(Value=PRO_ANTI))
        -> WorkflowOutput
    -> SelectMany Pro_Anti_Trial => #4
        SubscribeSubject Stage => #0
        -> Condition Habituation
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Habituation))
            -> WorkflowOutput
        -> SelectMany Habituation => #2
            WorkflowInput Source1
            -> SelectMany Air_Puff => #1
                Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample
                -> Take(Count=1) => #2
                -> Condition Heads
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=0))
                    -> WorkflowOutput
                -> SelectMany Left_Air_Puff => #4
                    WorkflowInput Source1
                    -> SelectMany Left_Pulses
                        Timer(DueTime=PT0S, Period=PT0.075S)
                        -> Take(Count=5)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform G
                          Expression: 'G'
                        -> MulticastSubject Arduino_Command
                        -> Delay(DueTime=PT0.5S)
                        -> WorkflowOutput
                    -> StringProperty(Value=Left)
                    -> MulticastSubject Air_Puff_Side
                    -> WorkflowOutput
                #2 -> Condition Tails
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> SelectMany Right_Air_Puff => #6
                    WorkflowInput Source1
                    -> SelectMany Right_Pulses
                        Timer(DueTime=PT0S, Period=PT0.075S)
                        -> Take(Count=5)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform E
                          Expression: 'E'
                        -> MulticastSubject Arduino_Command
                        -> Delay(DueTime=PT0.5S)
                        -> WorkflowOutput
                    -> StringProperty(Value=Right)
                    -> MulticastSubject Air_Puff_Side
                    -> WorkflowOutput
                #4, #6 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            SubscribeSubject Go_Cue_Dur
            -> PropertyMapping(DueTime) => #3
            #1, #3 -> SelectMany Go_Cue
                WorkflowInput Source1 => #0
                ExternalizedMapping(DueTime) => #1
                #0, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                -> WorkflowOutput
            -> SelectMany Release_Reward
                SubscribeSubject Air_Puff_Contingency => #0
                -> Condition Pro
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Pro))
                    -> WorkflowOutput
                -> SelectMany Pro_Reward => #2
                    SubscribeSubject Air_Puff_Side => #0
                    -> Condition Left
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Left))
                        -> WorkflowOutput
                    -> SelectMany Reward_Left => #2
                        WorkflowInput Source1
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject Left_Valve => #2
                        SubscribeSubject Left_Valve_Time
                        -> PropertyMapping(DueTime) => #4
                        #2, #4 -> Bonsai.Shaders.Delay(DueTime=PT0.05S)
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject Left_Valve => #7
                        ExternalizedMapping(Value) => #8
                        #7, #8 -> StringProperty(Value=Left)
                        -> MulticastSubject Reward_Side
                        -> WorkflowOutput
                    #0 -> Condition Right
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Right))
                        -> WorkflowOutput
                    -> SelectMany Reward_Right => #4
                        WorkflowInput Source1
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject Right_Valve => #2
                        SubscribeSubject Left_Valve_Time
                        -> PropertyMapping(DueTime) => #4
                        #2, #4 -> Bonsai.Shaders.Delay(DueTime=PT0.05S)
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject Right_Valve => #7
                        ExternalizedMapping(Value) => #8
                        #7, #8 -> StringProperty(Value=Right)
                        -> MulticastSubject Reward_Side
                        -> WorkflowOutput
                    #2, #4 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Condition Anti
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Anti))
                    -> WorkflowOutput
                -> SelectMany Anti_Reward => #4
                    SubscribeSubject Air_Puff_Side => #0
                    -> Condition Left
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Left))
                        -> WorkflowOutput
                    -> SelectMany Reward_Right => #2
                        WorkflowInput Source1
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject Right_Valve => #2
                        SubscribeSubject Left_Valve_Time
                        -> PropertyMapping(DueTime) => #4
                        #2, #4 -> Bonsai.Shaders.Delay(DueTime=PT0.05S)
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject Right_Valve => #7
                        ExternalizedMapping(Value) => #8
                        #7, #8 -> StringProperty(Value=Right)
                        -> MulticastSubject Reward_Side
                        -> WorkflowOutput
                    #0 -> Condition Right
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Right))
                        -> WorkflowOutput
                    -> SelectMany Reward_Left => #4
                        WorkflowInput Source1
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject Left_Valve => #2
                        SubscribeSubject Left_Valve_Time
                        -> PropertyMapping(DueTime) => #4
                        #2, #4 -> Bonsai.Shaders.Delay(DueTime=PT0.05S)
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject Left_Valve => #7
                        ExternalizedMapping(Value) => #8
                        #7, #8 -> StringProperty(Value=Left)
                        -> MulticastSubject Reward_Side
                        -> WorkflowOutput
                    #2, #4 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            -> WorkflowOutput
        #0 -> Condition Lick_To_Release
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Lick_To_Release))
            -> WorkflowOutput
        -> SelectMany Lick_To_Release => #4
            SubscribeSubject Beam_1_Bool
            -> Condition False
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> StringProperty(Value=Left) => #2
            SubscribeSubject Beam_2_Bool
            -> Condition False
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> StringProperty(Value=Right) => #5
            #2, #5 -> Merge
            -> Take(Count=1)
            -> MulticastSubject First_Lick => #8
            -> Condition Left => #9
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=StringProperty(Value=Left))
                -> WorkflowOutput
            -> Condition Pro
                SubscribeSubject Air_Puff_Contingency => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=StringProperty(Value=Pro))
                -> WorkflowOutput
            -> SelectMany Left_Air_Puff => #11
                WorkflowInput Source1
                -> SelectMany Left_Pulses
                    Timer(DueTime=PT0S, Period=PT0.075S)
                    -> Take(Count=5)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform G
                      Expression: 'G'
                    -> MulticastSubject Arduino_Command
                    -> Delay(DueTime=PT0.5S)
                    -> WorkflowOutput
                -> StringProperty(Value=Left)
                -> MulticastSubject Air_Puff_Side
                -> WorkflowOutput
            #9 -> Condition Anti
                SubscribeSubject Air_Puff_Contingency => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=StringProperty(Value=Anti))
                -> WorkflowOutput
            -> SelectMany Right_Air_Puff => #13
                WorkflowInput Source1
                -> SelectMany Right_Pulses
                    Timer(DueTime=PT0S, Period=PT0.075S)
                    -> Take(Count=5)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform E
                      Expression: 'E'
                    -> MulticastSubject Arduino_Command
                    -> Delay(DueTime=PT0.5S)
                    -> WorkflowOutput
                -> StringProperty(Value=Right)
                -> MulticastSubject Air_Puff_Side
                -> WorkflowOutput
            #11, #13 -> Merge => #14
            SubscribeSubject Go_Cue_Dur => #15
            -> PropertyMapping(DueTime) => #16
            #14, #16 -> SelectMany Go_Cue
                WorkflowInput Source1 => #0
                ExternalizedMapping(DueTime) => #1
                #0, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                -> WorkflowOutput
            -> SelectMany Reward_Left => #18
                WorkflowInput Source1
                -> BooleanProperty(Value=true)
                -> MulticastSubject Left_Valve => #2
                SubscribeSubject Left_Valve_Time
                -> PropertyMapping(DueTime) => #4
                #2, #4 -> Bonsai.Shaders.Delay(DueTime=PT0.05S)
                -> BooleanProperty(Value=false)
                -> MulticastSubject Left_Valve => #7
                ExternalizedMapping(Value) => #8
                #7, #8 -> StringProperty(Value=Left)
                -> MulticastSubject Reward_Side
                -> WorkflowOutput
            #8 -> Condition Right => #19
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=StringProperty(Value=Right))
                -> WorkflowOutput
            -> Condition Pro
                SubscribeSubject Air_Puff_Contingency => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=StringProperty(Value=Pro))
                -> WorkflowOutput
            -> SelectMany Right_Air_Puff => #21
                WorkflowInput Source1
                -> SelectMany Right_Pulses
                    Timer(DueTime=PT0S, Period=PT0.075S)
                    -> Take(Count=5)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform E
                      Expression: 'E'
                    -> MulticastSubject Arduino_Command
                    -> Delay(DueTime=PT0.5S)
                    -> WorkflowOutput
                -> StringProperty(Value=Right)
                -> MulticastSubject Air_Puff_Side
                -> WorkflowOutput
            #19 -> Condition Anti
                SubscribeSubject Air_Puff_Contingency => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=StringProperty(Value=Anti))
                -> WorkflowOutput
            -> SelectMany Left_Air_Puff => #23
                WorkflowInput Source1
                -> SelectMany Left_Pulses
                    Timer(DueTime=PT0S, Period=PT0.075S)
                    -> Take(Count=5)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform G
                      Expression: 'G'
                    -> MulticastSubject Arduino_Command
                    -> Delay(DueTime=PT0.5S)
                    -> WorkflowOutput
                -> StringProperty(Value=Left)
                -> MulticastSubject Air_Puff_Side
                -> WorkflowOutput
            #21, #23 -> Merge => #24
            #15 -> PropertyMapping(DueTime) => #25
            #24, #25 -> SelectMany Go_Cue
                WorkflowInput Source1 => #0
                ExternalizedMapping(DueTime) => #1
                #0, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                -> WorkflowOutput
            -> SelectMany Reward_Right => #27
                WorkflowInput Source1
                -> BooleanProperty(Value=true)
                -> MulticastSubject Right_Valve => #2
                SubscribeSubject Left_Valve_Time
                -> PropertyMapping(DueTime) => #4
                #2, #4 -> Bonsai.Shaders.Delay(DueTime=PT0.05S)
                -> BooleanProperty(Value=false)
                -> MulticastSubject Right_Valve => #7
                ExternalizedMapping(Value) => #8
                #7, #8 -> StringProperty(Value=Right)
                -> MulticastSubject Reward_Side
                -> WorkflowOutput
            #18, #27 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Condition Three_And_Three
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Three_And_Three))
            -> WorkflowOutput
        -> SelectMany Three_And_Three => #6
            WorkflowInput Source1
            -> SelectMany Response
                SubscribeSubject Beam_1_Bool
                -> Condition False
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> StringProperty(Value=Left) => #2
                SubscribeSubject Beam_2_Bool
                -> Condition False
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> StringProperty(Value=Right) => #5
                #2, #5 -> Merge
                -> Take(Count=1)
                -> MulticastSubject First_Lick => #8
                SubscribeSubject Correct_Side => #9
                #8, #9 -> CombineLatest => #10
                -> Condition Equal
                    WorkflowInput Source1
                    -> Equal
                    -> WorkflowOutput
                -> Take(Count=1)
                -> BooleanProperty(Value=true)
                -> MulticastSubject Correct => #14
                #10 -> MemberSelector(Selector=Item2) => #15
                #14, #15 -> Zip
                -> MemberSelector(Selector=Item2) => #17
                -> Condition Left => #18
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Left))
                    -> WorkflowOutput
                -> Condition Pro
                    SubscribeSubject Air_Puff_Contingency => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Pro))
                    -> WorkflowOutput
                -> SelectMany Left_Air_Puff => #20
                    WorkflowInput Source1
                    -> SelectMany Left_Pulses
                        Timer(DueTime=PT0S, Period=PT0.075S)
                        -> Take(Count=5)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform G
                          Expression: 'G'
                        -> MulticastSubject Arduino_Command
                        -> Delay(DueTime=PT0.5S)
                        -> WorkflowOutput
                    -> StringProperty(Value=Left)
                    -> MulticastSubject Air_Puff_Side
                    -> WorkflowOutput
                #18 -> Condition Anti
                    SubscribeSubject Air_Puff_Contingency => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Anti))
                    -> WorkflowOutput
                -> SelectMany Right_Air_Puff => #22
                    WorkflowInput Source1
                    -> SelectMany Right_Pulses
                        Timer(DueTime=PT0S, Period=PT0.075S)
                        -> Take(Count=5)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform E
                          Expression: 'E'
                        -> MulticastSubject Arduino_Command
                        -> Delay(DueTime=PT0.5S)
                        -> WorkflowOutput
                    -> StringProperty(Value=Right)
                    -> MulticastSubject Air_Puff_Side
                    -> WorkflowOutput
                #20, #22 -> Merge => #23
                SubscribeSubject Go_Cue_Dur => #24
                -> PropertyMapping(DueTime) => #25
                #23, #25 -> SelectMany Go_Cue
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(DueTime) => #1
                    #0, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                    -> WorkflowOutput
                -> SelectMany Reward_Left => #27
                    WorkflowInput Source1
                    -> BooleanProperty(Value=true)
                    -> MulticastSubject Left_Valve => #2
                    SubscribeSubject Left_Valve_Time
                    -> PropertyMapping(DueTime) => #4
                    #2, #4 -> Bonsai.Shaders.Delay(DueTime=PT0.05S)
                    -> BooleanProperty(Value=false)
                    -> MulticastSubject Left_Valve => #7
                    ExternalizedMapping(Value) => #8
                    #7, #8 -> StringProperty(Value=Left)
                    -> MulticastSubject Reward_Side
                    -> WorkflowOutput
                #17 -> Condition Right => #28
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Right))
                    -> WorkflowOutput
                -> Condition Pro
                    SubscribeSubject Air_Puff_Contingency => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Pro))
                    -> WorkflowOutput
                -> SelectMany Right_Air_Puff => #30
                    WorkflowInput Source1
                    -> SelectMany Right_Pulses
                        Timer(DueTime=PT0S, Period=PT0.075S)
                        -> Take(Count=5)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform E
                          Expression: 'E'
                        -> MulticastSubject Arduino_Command
                        -> Delay(DueTime=PT0.5S)
                        -> WorkflowOutput
                    -> StringProperty(Value=Right)
                    -> MulticastSubject Air_Puff_Side
                    -> WorkflowOutput
                #28 -> Condition Anti
                    SubscribeSubject Air_Puff_Contingency => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Anti))
                    -> WorkflowOutput
                -> SelectMany Left_Air_Puff => #32
                    WorkflowInput Source1
                    -> SelectMany Left_Pulses
                        Timer(DueTime=PT0S, Period=PT0.075S)
                        -> Take(Count=5)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform G
                          Expression: 'G'
                        -> MulticastSubject Arduino_Command
                        -> Delay(DueTime=PT0.5S)
                        -> WorkflowOutput
                    -> StringProperty(Value=Left)
                    -> MulticastSubject Air_Puff_Side
                    -> WorkflowOutput
                #30, #32 -> Merge => #33
                #24 -> PropertyMapping(DueTime) => #34
                #33, #34 -> SelectMany Go_Cue
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(DueTime) => #1
                    #0, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                    -> WorkflowOutput
                -> SelectMany Reward_Right => #36
                    WorkflowInput Source1
                    -> BooleanProperty(Value=true)
                    -> MulticastSubject Right_Valve => #2
                    SubscribeSubject Left_Valve_Time
                    -> PropertyMapping(DueTime) => #4
                    #2, #4 -> Bonsai.Shaders.Delay(DueTime=PT0.05S)
                    -> BooleanProperty(Value=false)
                    -> MulticastSubject Right_Valve => #7
                    ExternalizedMapping(Value) => #8
                    #7, #8 -> StringProperty(Value=Right)
                    -> MulticastSubject Reward_Side
                    -> WorkflowOutput
                #27, #36 -> Merge => #37
                #10 -> Condition Not_Equal
                    WorkflowInput Source1
                    -> NotEqual
                    -> WorkflowOutput
                -> Take(Count=1)
                -> BooleanProperty(Value=false)
                -> MulticastSubject Correct
                -> SelectMany Do_Nothing => #42
                    WorkflowInput Source1
                    -> StringProperty(Value=NaN)
                    -> MulticastSubject Reward_Side
                    -> WorkflowOutput
                #37, #42 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany Set_Correct_Side
                SubscribeSubject Correct_Side => #0
                SubscribeSubject Correct => #1
                -> Condition Yes
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> IntProperty(Value=1) => #3
                #1 -> Condition No
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> IntProperty(Value=0) => #5
                #3, #5 -> Merge
                -> SelectMany Increment_Correct_Side
                    SubscribeSubject Correct_Side_Count => #0
                    WorkflowInput Source1 => #1
                    #1, #0 -> Zip
                    -> Add
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> MulticastSubject Correct_Side_Count => #8
                -> Bonsai.Scripting.IronPython.PythonTransform Multiple_Of_Three? => #9
                  Script:
                    @returns(bool)
                    def process(value):
                      if value%3 == 0:
                        result = True
                      else:
                        result = False
                      return result
                #8 -> NotEqual(Operand=IntProperty(Value=0)) => #10
                #9, #10 -> Zip
                -> LogicalAnd => #12
                -> Condition True
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> IntProperty(Value=0)
                -> MulticastSubject Correct_Side_Count => #15
                #15, #0 -> Zip
                -> Bonsai.Scripting.IronPython.PythonTransform Switch_Correct_Side
                  Script:
                    @returns(str)
                    def process(value):
                      correct_side = value[1]
                      if correct_side == 'Left':
                        result = 'Right'
                      else:
                        result = 'Left'
                      return result
                -> MulticastSubject Correct_Side => #18
                #12 -> Condition False
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> StringProperty(Value=NaN) => #20
                #18, #20 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Condition Full_Task_Disc
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Full_Task_Disc))
            -> WorkflowOutput
        -> SelectMany Full_Task_Disc => #8
            WorkflowInput Source1
            -> SelectMany Sound
                SubscribeSubject Sound_Air_Puff_Contingency => #0
                -> Condition "Low = Pro, High = Anti"
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Low_Pro_High_Anti))
                    -> WorkflowOutput
                -> SelectMany "Low = Pro, High = Anti" => #2
                    SubscribeSubject Air_Puff_Contingency => #0
                    -> Condition Pro
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Pro))
                        -> WorkflowOutput
                    -> SelectMany "< Boundary" => #2
                        SubscribeSubject Nb_Of_Stim
                        -> Divide(Operand=IntProperty(Value=2))
                        -> PropertyMapping(Upper)
                        -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=1)
                        -> Bonsai.Numerics.Distributions.Sample
                        -> SelectMany Play
                            WorkflowInput Source1 => #0
                            -> Condition 1
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Value) => #1
                                #0, #1 -> Equal(Operand=IntProperty(Value=1))
                                -> WorkflowOutput
                            -> SelectMany -1 => #2
                                SubscribeSubject Sound_Duration
                                -> PropertyMapping(DueTime) => #1
                                WorkflowInput Source1 => #2
                                ExternalizedMapping(Value) => #3
                                #2, #3 -> FloatProperty(Value=-1)
                                -> MulticastSubject Stim_Relative => #5
                                #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                                -> Take(Count=1)
                                -> WorkflowOutput
                            #0 -> Condition 2
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Value) => #1
                                #0, #1 -> Equal(Operand=IntProperty(Value=2))
                                -> WorkflowOutput
                            -> SelectMany -0.75 => #4
                                SubscribeSubject Sound_Duration
                                -> PropertyMapping(DueTime) => #1
                                WorkflowInput Source1 => #2
                                ExternalizedMapping(Value) => #3
                                #2, #3 -> FloatProperty(Value=-0.75)
                                -> MulticastSubject Stim_Relative => #5
                                #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.05S)
                                -> Take(Count=1)
                                -> WorkflowOutput
                            #0 -> Condition 3
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Value) => #1
                                #0, #1 -> Equal(Operand=IntProperty(Value=3))
                                -> WorkflowOutput
                            -> SelectMany -0.5 => #6
                                SubscribeSubject Sound_Duration
                                -> PropertyMapping(DueTime) => #1
                                WorkflowInput Source1 => #2
                                ExternalizedMapping(Value) => #3
                                #2, #3 -> FloatProperty(Value=-0.5)
                                -> MulticastSubject Stim_Relative => #5
                                #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.05S)
                                -> Take(Count=1)
                                -> WorkflowOutput
                            #0 -> Condition 4
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Value) => #1
                                #0, #1 -> Equal(Operand=IntProperty(Value=4))
                                -> WorkflowOutput
                            -> SelectMany -0.25 => #8
                                SubscribeSubject Sound_Duration
                                -> PropertyMapping(DueTime) => #1
                                WorkflowInput Source1 => #2
                                ExternalizedMapping(Value) => #3
                                #2, #3 -> FloatProperty(Value=-0.25)
                                -> MulticastSubject Stim_Relative => #5
                                #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.05S)
                                -> Take(Count=1)
                                -> WorkflowOutput
                            #2, #4, #6, #8 -> Merge
                            -> Take(Count=1)
                            -> WorkflowOutput
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Condition Anti
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Anti))
                        -> WorkflowOutput
                    -> SelectMany "> Boundary" => #4
                        SubscribeSubject Nb_Of_Stim
                        -> Divide(Operand=IntProperty(Value=2))
                        -> PropertyMapping(Upper)
                        -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=1)
                        -> Bonsai.Numerics.Distributions.Sample
                        -> SelectMany Play
                            WorkflowInput Source1 => #0
                            -> Condition 1
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Value) => #1
                                #0, #1 -> Equal(Operand=IntProperty(Value=1))
                                -> WorkflowOutput
                            -> SelectMany 1 => #2
                                SubscribeSubject Sound_Duration
                                -> PropertyMapping(DueTime) => #1
                                WorkflowInput Source1 => #2
                                ExternalizedMapping(Value) => #3
                                #2, #3 -> FloatProperty(Value=1)
                                -> MulticastSubject Stim_Relative => #5
                                #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                                -> Take(Count=1)
                                -> WorkflowOutput
                            #0 -> Condition 2
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Value) => #1
                                #0, #1 -> Equal(Operand=IntProperty(Value=2))
                                -> WorkflowOutput
                            -> SelectMany 0.75 => #4
                                SubscribeSubject Sound_Duration
                                -> PropertyMapping(DueTime) => #1
                                WorkflowInput Source1 => #2
                                ExternalizedMapping(Value) => #3
                                #2, #3 -> FloatProperty(Value=0.75)
                                -> MulticastSubject Stim_Relative => #5
                                #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.05S)
                                -> Take(Count=1)
                                -> WorkflowOutput
                            #0 -> Condition 3
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Value) => #1
                                #0, #1 -> Equal(Operand=IntProperty(Value=3))
                                -> WorkflowOutput
                            -> SelectMany 0.5 => #6
                                SubscribeSubject Sound_Duration
                                -> PropertyMapping(DueTime) => #1
                                WorkflowInput Source1 => #2
                                ExternalizedMapping(Value) => #3
                                #2, #3 -> FloatProperty(Value=0.5)
                                -> MulticastSubject Stim_Relative => #5
                                #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.05S)
                                -> Take(Count=1)
                                -> WorkflowOutput
                            #0 -> Condition 4
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Value) => #1
                                #0, #1 -> Equal(Operand=IntProperty(Value=4))
                                -> WorkflowOutput
                            -> SelectMany 0.25 => #8
                                SubscribeSubject Sound_Duration
                                -> PropertyMapping(DueTime) => #1
                                WorkflowInput Source1 => #2
                                ExternalizedMapping(Value) => #3
                                #2, #3 -> FloatProperty(Value=0.25)
                                -> MulticastSubject Stim_Relative => #5
                                #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.05S)
                                -> Take(Count=1)
                                -> WorkflowOutput
                            #2, #4, #6, #8 -> Merge
                            -> Take(Count=1)
                            -> WorkflowOutput
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #2, #4 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Condition "Low = Anti, High = Pro"
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Low_Anti_High_Pro))
                    -> WorkflowOutput
                -> SelectMany "Low = Anti, High = Pro" => #4
                    SubscribeSubject Air_Puff_Contingency => #0
                    -> Condition Anti
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Anti))
                        -> WorkflowOutput
                    -> SelectMany "< Boundary" => #2
                        SubscribeSubject Nb_Of_Stim
                        -> Divide(Operand=IntProperty(Value=2))
                        -> PropertyMapping(Upper)
                        -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=1)
                        -> Bonsai.Numerics.Distributions.Sample
                        -> SelectMany Play
                            WorkflowInput Source1 => #0
                            -> Condition 1
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Value) => #1
                                #0, #1 -> Equal(Operand=IntProperty(Value=1))
                                -> WorkflowOutput
                            -> SelectMany -1 => #2
                                SubscribeSubject Sound_Duration
                                -> PropertyMapping(DueTime) => #1
                                WorkflowInput Source1 => #2
                                ExternalizedMapping(Value) => #3
                                #2, #3 -> FloatProperty(Value=-1)
                                -> MulticastSubject Stim_Relative => #5
                                #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.05S)
                                -> Take(Count=1)
                                -> WorkflowOutput
                            #0 -> Condition 2
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Value) => #1
                                #0, #1 -> Equal(Operand=IntProperty(Value=2))
                                -> WorkflowOutput
                            -> SelectMany -0.75 => #4
                                SubscribeSubject Sound_Duration
                                -> PropertyMapping(DueTime) => #1
                                WorkflowInput Source1 => #2
                                ExternalizedMapping(Value) => #3
                                #2, #3 -> FloatProperty(Value=-0.75)
                                -> MulticastSubject Stim_Relative => #5
                                #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0S)
                                -> Take(Count=1)
                                -> WorkflowOutput
                            #0 -> Condition 3
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Value) => #1
                                #0, #1 -> Equal(Operand=IntProperty(Value=3))
                                -> WorkflowOutput
                            -> SelectMany -0.5 => #6
                                SubscribeSubject Sound_Duration
                                -> PropertyMapping(DueTime) => #1
                                WorkflowInput Source1 => #2
                                ExternalizedMapping(Value) => #3
                                #2, #3 -> FloatProperty(Value=-0.5)
                                -> MulticastSubject Stim_Relative => #5
                                #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0S)
                                -> Take(Count=1)
                                -> WorkflowOutput
                            #0 -> Condition 4
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Value) => #1
                                #0, #1 -> Equal(Operand=IntProperty(Value=4))
                                -> WorkflowOutput
                            -> SelectMany -0.25 => #8
                                SubscribeSubject Sound_Duration
                                -> PropertyMapping(DueTime) => #1
                                WorkflowInput Source1 => #2
                                ExternalizedMapping(Value) => #3
                                #2, #3 -> FloatProperty(Value=-0.25)
                                -> MulticastSubject Stim_Relative => #5
                                #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0S)
                                -> Take(Count=1)
                                -> WorkflowOutput
                            #2, #4, #6, #8 -> Merge
                            -> Take(Count=1)
                            -> WorkflowOutput
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Condition Pro
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Pro))
                        -> WorkflowOutput
                    -> SelectMany "> Boundary" => #4
                        SubscribeSubject Nb_Of_Stim
                        -> Divide(Operand=IntProperty(Value=2))
                        -> PropertyMapping(Upper)
                        -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=2)
                        -> Bonsai.Numerics.Distributions.Sample
                        -> SelectMany Play
                            WorkflowInput Source1 => #0
                            -> Condition 1
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Value) => #1
                                #0, #1 -> Equal(Operand=IntProperty(Value=1))
                                -> WorkflowOutput
                            -> SelectMany 1 => #2
                                SubscribeSubject Sound_Duration
                                -> PropertyMapping(DueTime) => #1
                                WorkflowInput Source1 => #2
                                ExternalizedMapping(Value) => #3
                                #2, #3 -> FloatProperty(Value=1)
                                -> MulticastSubject Stim_Relative => #5
                                #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.5S)
                                -> Take(Count=1)
                                -> WorkflowOutput
                            #0 -> Condition 2
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Value) => #1
                                #0, #1 -> Equal(Operand=IntProperty(Value=2))
                                -> WorkflowOutput
                            -> SelectMany 0.75 => #4
                                SubscribeSubject Sound_Duration
                                -> PropertyMapping(DueTime) => #1
                                WorkflowInput Source1 => #2
                                ExternalizedMapping(Value) => #3
                                #2, #3 -> FloatProperty(Value=0.75)
                                -> MulticastSubject Stim_Relative => #5
                                #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0S)
                                -> Take(Count=1)
                                -> WorkflowOutput
                            #0 -> Condition 3
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Value) => #1
                                #0, #1 -> Equal(Operand=IntProperty(Value=3))
                                -> WorkflowOutput
                            -> SelectMany 0.5 => #6
                                SubscribeSubject Sound_Duration
                                -> PropertyMapping(DueTime) => #1
                                WorkflowInput Source1 => #2
                                ExternalizedMapping(Value) => #3
                                #2, #3 -> FloatProperty(Value=0.5)
                                -> MulticastSubject Stim_Relative => #5
                                #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0S)
                                -> Take(Count=1)
                                -> WorkflowOutput
                            #0 -> Condition 4
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Value) => #1
                                #0, #1 -> Equal(Operand=IntProperty(Value=4))
                                -> WorkflowOutput
                            -> SelectMany 0.25 => #8
                                SubscribeSubject Sound_Duration
                                -> PropertyMapping(DueTime) => #1
                                WorkflowInput Source1 => #2
                                ExternalizedMapping(Value) => #3
                                #2, #3 -> FloatProperty(Value=0.25)
                                -> MulticastSubject Stim_Relative => #5
                                #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0S)
                                -> Take(Count=1)
                                -> WorkflowOutput
                            #2, #4, #6, #8 -> Merge
                            -> Take(Count=1)
                            -> WorkflowOutput
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #2, #4 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput

                StringProperty(Value=Sound)
                -> MulticastSubject Trial_Epoch
            -> SelectMany Delay
                WorkflowInput Source1 => #0
                SubscribeSubject Working_Memory_Type => #1
                -> Condition Fixed
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Fixed))
                    -> WorkflowOutput
                -> FloatProperty(Value=0.5) => #3
                #1 -> Condition Variable
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Variable))
                    -> WorkflowOutput
                -> SelectMany Create_Disc_Uni => #5
                    ExternalizedMapping(Lower, Upper)
                    -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=4)
                    -> Bonsai.Numerics.Distributions.Sample
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> Condition Option_1
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0.5) => #7
                #5 -> Condition Option_2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=2))
                    -> WorkflowOutput
                -> FloatProperty(Value=0.75) => #9
                #5 -> Condition Option_3
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=3))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #11
                #5 -> Condition Option_4
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=4))
                    -> WorkflowOutput
                -> FloatProperty(Value=1.25) => #13
                #7, #9, #11, #13, #3 -> Merge
                -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromSeconds
                  Expression: TimeSpan.FromSeconds(it)
                -> MulticastSubject Working_Memory_Delay
                -> PropertyMapping(DueTime) => #17
                #0, #17 -> Bonsai.Shaders.Delay(DueTime=PT0.75S)
                -> WorkflowOutput

                StringProperty(Value=Delay)
                -> MulticastSubject Trial_Epoch
            -> SelectMany Air_Puff
                Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample
                -> Take(Count=1) => #2
                SubscribeSubject P_Right => #3
                #2, #3 -> Zip => #4
                -> LessThan
                -> Condition True => #6
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Condition Anti
                    SubscribeSubject Air_Puff_Contingency => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Anti))
                    -> WorkflowOutput
                -> StringProperty(Value=Right) => #8
                #6 -> Condition Pro
                    SubscribeSubject Air_Puff_Contingency => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Pro))
                    -> WorkflowOutput
                -> StringProperty(Value=Right) => #10
                #4 -> GreaterThanOrEqual
                -> Condition True => #12
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Condition Anti
                    SubscribeSubject Air_Puff_Contingency => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Anti))
                    -> WorkflowOutput
                -> StringProperty(Value=Left) => #14
                #10, #14 -> Merge
                -> MulticastSubject Correct_Side
                -> SelectMany Right_Air_Puff => #17
                    WorkflowInput Source1
                    -> SelectMany Right_Pulses
                        Timer(DueTime=PT0S, Period=PT0.075S)
                        -> Take(Count=5)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform E
                          Expression: 'E'
                        -> MulticastSubject Arduino_Command
                        -> Delay(DueTime=PT0.5S)
                        -> WorkflowOutput
                    -> StringProperty(Value=Right)
                    -> WorkflowOutput
                #12 -> Condition Pro
                    SubscribeSubject Air_Puff_Contingency => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Pro))
                    -> WorkflowOutput
                -> StringProperty(Value=Left) => #19
                #8, #19 -> Merge
                -> MulticastSubject Correct_Side
                -> SelectMany Left_Air_Puff => #22
                    WorkflowInput Source1
                    -> SelectMany Left_Pulses
                        Timer(DueTime=PT0S, Period=PT0.075S)
                        -> Take(Count=5)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform G
                          Expression: 'G'
                        -> MulticastSubject Arduino_Command
                        -> Delay(DueTime=PT0.5S)
                        -> WorkflowOutput
                    -> StringProperty(Value=Left)
                    -> WorkflowOutput
                #17, #22 -> Merge
                -> MulticastSubject Air_Puff_Side
                -> Take(Count=1)
                -> WorkflowOutput

                StringProperty(Value=Air_Puff)
                -> MulticastSubject Trial_Epoch
            -> SelectMany Go_Cue => #4
                WorkflowInput Source1 => #0
                SubscribeSubject Go_Cue_Dur
                -> PropertyMapping(DueTime) => #2
                #0, #2 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                -> WorkflowOutput

                StringProperty(Value=Go_Cue)
                -> MulticastSubject Trial_Epoch
            -> SelectMany Response => #5
                SubscribeSubject Beam_1_Bool
                -> Condition False
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> StringProperty(Value=Left) => #2
                SubscribeSubject Beam_2_Bool
                -> Condition False
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> StringProperty(Value=Right) => #5
                #2, #5 -> Merge => #6
                SubscribeSubject Air_Puff_Contingency => #7
                -> Equal(Operand=StringProperty(Value=Pro)) => #8
                SubscribeSubject Air_Puff_Side => #9
                -> Equal(Operand=StringProperty(Value=Left)) => #10
                #8, #10 -> Zip
                -> LogicalAnd => #12
                #9 -> Equal(Operand=StringProperty(Value=Right)) => #13
                #8, #13 -> Zip
                -> LogicalAnd => #15
                #7 -> Equal(Operand=StringProperty(Value=Anti)) => #16
                #16, #10 -> Zip
                -> LogicalAnd => #18
                #16, #13 -> Zip
                -> LogicalAnd => #20
                SubscribeSubject Agent_Sim
                -> Condition True
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany Decision => #23
                    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                    -> Bonsai.Numerics.Distributions.Sample => #1
                    SubscribeSubject Agent_Performance
                    -> PropertyMapping(Value) => #3
                    #1, #3 -> LessThan(Operand=DoubleProperty(Value=0.8)) => #4
                    -> Condition True
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> SelectMany Correct_Choice => #6
                        SubscribeSubject Air_Puff_Side => #0
                        -> Equal(Operand=StringProperty(Value=Left)) => #1
                        SubscribeSubject Air_Puff_Contingency => #2
                        -> Equal(Operand=StringProperty(Value=Pro)) => #3
                        #1, #3 -> CombineLatest
                        -> LogicalAnd
                        -> Condition => #6
                            WorkflowInput Source1
                            -> WorkflowOutput
                        #2 -> Equal(Operand=StringProperty(Value=Anti)) => #7
                        #1, #7 -> CombineLatest
                        -> LogicalAnd
                        -> Condition => #10
                            WorkflowInput Source1
                            -> WorkflowOutput
                        #0 -> Equal(Operand=StringProperty(Value=Right)) => #11
                        #11, #3 -> CombineLatest
                        -> LogicalAnd
                        -> Condition => #14
                            WorkflowInput Source1
                            -> WorkflowOutput
                        #14, #10 -> Merge
                        -> StringProperty(Value=Right) => #16
                        #11, #7 -> CombineLatest
                        -> LogicalAnd
                        -> Condition => #19
                            WorkflowInput Source1
                            -> WorkflowOutput
                        #6, #19 -> Merge
                        -> StringProperty(Value=Left) => #21
                        #16, #21 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #4 -> Condition False
                        WorkflowInput Source1
                        -> BitwiseNot
                        -> WorkflowOutput
                    -> SelectMany Guess => #8
                        Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                        -> Bonsai.Numerics.Distributions.Sample => #1
                        SubscribeSubject Agent_Right_Bias
                        -> PropertyMapping(Value) => #3
                        #1, #3 -> LessThan(Operand=DoubleProperty(Value=0.5)) => #4
                        -> Condition True
                            WorkflowInput Source1
                            -> WorkflowOutput
                        -> StringProperty(Value=Right) => #6
                        #4 -> Condition False
                            WorkflowInput Source1
                            -> BitwiseNot
                            -> WorkflowOutput
                        -> StringProperty(Value=Left) => #8
                        #6, #8 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #6, #8 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #6, #23 -> Merge
                -> Take(Count=1)
                -> MulticastSubject First_Lick => #26
                -> Equal(Operand=StringProperty(Value=Left)) => #27
                #27, #12 -> Zip
                -> LogicalAnd
                -> Condition "Pro, Lick = L, Puff = L " => #30
                    WorkflowInput Source1
                    -> WorkflowOutput
                #15, #27 -> Zip
                -> LogicalAnd
                -> Condition "Pro, Lick = L, Puff = R " => #33
                    WorkflowInput Source1
                    -> WorkflowOutput
                #18, #27 -> Zip
                -> LogicalAnd
                -> Condition "Anti, Lick = L, Puff = L" => #36
                    WorkflowInput Source1
                    -> WorkflowOutput
                #20, #27 -> Zip
                -> LogicalAnd
                -> Condition "Anti, Lick = L, Puff = R" => #39
                    WorkflowInput Source1
                    -> WorkflowOutput
                #26 -> Equal(Operand=StringProperty(Value=Right)) => #40
                #40, #12 -> Zip
                -> LogicalAnd
                -> Condition "Pro, Lick = R, Puff = L" => #43
                    WorkflowInput Source1
                    -> WorkflowOutput
                #40, #15 -> Zip
                -> LogicalAnd
                -> Condition "Pro, Lick = R, Puff = R" => #46
                    WorkflowInput Source1
                    -> WorkflowOutput
                #20, #40 -> Zip
                -> LogicalAnd
                -> Condition "Anti, Lick = R, Puff = R" => #49
                    WorkflowInput Source1
                    -> WorkflowOutput
                #33, #36, #43, #49 -> Merge
                -> BooleanProperty(Value=false) => #51
                #40, #18 -> Zip
                -> LogicalAnd
                -> Condition "Anti, Lick = R, Puff = L" => #54
                    WorkflowInput Source1
                    -> WorkflowOutput
                #30, #39, #46, #54 -> Merge
                -> BooleanProperty(Value=true) => #56
                #56, #51 -> Merge
                -> Take(Count=1)
                -> MulticastSubject Correct
                -> WorkflowOutput

                StringProperty(Value=Response_Window)
                -> MulticastSubject Trial_Epoch
            -> BooleanProperty(Value=false) => #6
            SubscribeSubject Response_Window
            -> PropertyMapping(DueTime) => #8
            #4, #8 -> Delay(DueTime=PT10S)
            -> BooleanProperty(Value=true) => #10
            #6, #10 -> Merge
            -> Take(Count=1)
            -> MulticastSubject Abort_Trial => #13
            -> Condition Response
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> SelectMany Feedback => #15
                SubscribeSubject Correct => #0
                -> Condition Yes
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany Success
                    SubscribeSubject First_Lick => #0
                    -> Condition Left
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Left))
                        -> WorkflowOutput
                    -> SelectMany Reward_Left => #2
                        WorkflowInput Source1
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject Left_Valve => #2
                        SubscribeSubject Left_Valve_Time
                        -> PropertyMapping(DueTime) => #4
                        #2, #4 -> Bonsai.Shaders.Delay(DueTime=PT0.005S)
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject Left_Valve => #7
                        ExternalizedMapping(Value) => #8
                        #7, #8 -> StringProperty(Value=Left)
                        -> MulticastSubject Reward_Side
                        -> WorkflowOutput
                    #0 -> Condition Right
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Right))
                        -> WorkflowOutput
                    -> SelectMany Reward_Right => #4
                        WorkflowInput Source1
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject Right_Valve => #2
                        SubscribeSubject Left_Valve_Time
                        -> PropertyMapping(DueTime) => #4
                        #2, #4 -> Bonsai.Shaders.Delay(DueTime=PT0.005S)
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject Right_Valve => #7
                        ExternalizedMapping(Value) => #8
                        #7, #8 -> StringProperty(Value=Right)
                        -> MulticastSubject Reward_Side
                        -> WorkflowOutput
                    #2, #4 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput

                    StringProperty(Value=Reward)
                    -> MulticastSubject Trial_Epoch
                -> StringProperty(Value=Correct) => #3
                #0 -> Condition No
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> SelectMany Failure
                    WorkflowInput Source1 => #0
                    SubscribeSubject Timeout_Duration
                    -> PropertyMapping(DueTime) => #2
                    #0, #2 -> Bonsai.Shaders.Delay(DueTime=PT3S)
                    -> WorkflowOutput

                    StringProperty(Value=Timeout)
                    -> MulticastSubject Trial_Epoch
                -> StringProperty(Value=Incorrect) => #6
                #3, #6 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput

                StringProperty(Value=Feedback)
                -> MulticastSubject Trial_Epoch
            #13 -> Condition Abort
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=Abort) => #17
            #15, #17 -> Merge
            -> Take(Count=1)
            -> MulticastSubject Trial_Outcome
            -> WorkflowOutput
            #4, #5 -> GroupWorkflow Record_Latency
                SubscribeSubject Trial_End
                -> Condition => #1
                    WorkflowInput Source1
                    -> WorkflowOutput
                WorkflowInput Source1
                -> SelectMany Start_Timer => #3
                    Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.001S)
                    -> WorkflowOutput
                WorkflowInput Source2 => #4
                #1, #4 -> Merge => #5
                #3, #5 -> TakeUntil
                -> TakeLast(Count=1)
                -> MulticastSubject Response_Latency
                -> WorkflowOutput
        #0 -> Condition Full_Task_Cont
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Full_Task_Cont))
            -> WorkflowOutput
        -> SelectMany Full_Task_Cont => #10
            WorkflowInput Source1
            -> SelectMany Sound
                SubscribeSubject Sound_Air_Puff_Contingency => #0
                -> Condition "Low = Pro, High = Anti"
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Low_Pro_High_Anti))
                    -> WorkflowOutput
                -> SelectMany "Low = Pro, High = Anti" => #2
                    SubscribeSubject Air_Puff_Contingency => #0
                    -> Condition Pro
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Pro))
                        -> WorkflowOutput
                    -> SelectMany "< Boundary" => #2
                        SubscribeSubject Distribution => #0
                        -> Condition Uniform? => #1
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=StringProperty(Value=Uniform))
                            -> WorkflowOutput
                        #0 -> Condition Asym_Left? => #2
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=StringProperty(Value=Asym_Left))
                            -> WorkflowOutput
                        #1, #2 -> Merge
                        -> SelectMany "< Boundary, Unif" => #4
                            ExternalizedMapping(Lower, Upper)
                            -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-1, Upper=0)
                            -> Bonsai.Numerics.Distributions.Sample
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #0 -> Condition Asym_Right?
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=StringProperty(Value=Asym_Right))
                            -> WorkflowOutput
                        -> SelectMany "< Boundary, Asym" => #6
                            ExternalizedMapping(Lower) => #0
                            Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.001S)
                            -> SelectMany Exp => #2
                                SubscribeSubject Distribution_Exp_Rate
                                -> PropertyMapping(Rate)
                                -> Bonsai.Numerics.Distributions.CreateExponential(Rate=2.1532900333404541)
                                -> Bonsai.Numerics.Distributions.Sample
                                -> Multiply(Operand=DoubleProperty(Value=-1))
                                -> Take(Count=1)
                                -> WorkflowOutput
                            #2, #0 -> Condition ">-1 ?"
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Value(DisplayName=Lower)) => #1
                                #0, #1 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=-1))
                                -> WorkflowOutput
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #4, #6 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Condition Anti
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Anti))
                        -> WorkflowOutput
                    -> SelectMany "> Boundary" => #4
                        SubscribeSubject Distribution => #0
                        -> Condition Uniform? => #1
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=StringProperty(Value=Uniform))
                            -> WorkflowOutput
                        #0 -> Condition Asym_Right? => #2
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=StringProperty(Value=Asym_Right))
                            -> WorkflowOutput
                        #1, #2 -> Merge
                        -> SelectMany "> Boundary, Unif" => #4
                            ExternalizedMapping(Lower, Upper)
                            -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                            -> Bonsai.Numerics.Distributions.Sample
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #0 -> Condition Asym_Left?
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=StringProperty(Value=Asym_Left))
                            -> WorkflowOutput
                        -> SelectMany "> Boundary, Asym" => #6
                            ExternalizedMapping(Upper) => #0
                            Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.001S)
                            -> SelectMany Exp => #2
                                SubscribeSubject Distribution_Exp_Rate
                                -> PropertyMapping(Rate)
                                -> Bonsai.Numerics.Distributions.CreateExponential(Rate=2.15329)
                                -> Bonsai.Numerics.Distributions.Sample
                                -> Take(Count=1)
                                -> WorkflowOutput
                            #2, #0 -> Condition "<1 ?"
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Value(DisplayName=Upper)) => #1
                                #0, #1 -> LessThanOrEqual(Operand=DoubleProperty(Value=1))
                                -> WorkflowOutput
                            -> Take(Count=1)
                            -> WorkflowOutput
                        #4, #6 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #2, #4 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Condition "Low = Anti, High = Pro"
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Low_Anti_High_Pro))
                    -> WorkflowOutput
                -> SelectMany "Low = Anti, High = Pro" => #4
                    SubscribeSubject Air_Puff_Contingency => #0
                    -> Condition Anti
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Anti))
                        -> WorkflowOutput
                    -> SelectMany "< Boundary" => #2
                        SubscribeSubject Distribution
                        -> Condition Uniform?
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=StringProperty(Value=Uniform))
                            -> WorkflowOutput
                        -> SelectMany "< Boundary, Unif"
                            ExternalizedMapping(Lower, Upper)
                            -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-1, Upper=0)
                            -> Bonsai.Numerics.Distributions.Sample
                            -> Take(Count=1)
                            -> WorkflowOutput
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Condition Pro
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Pro))
                        -> WorkflowOutput
                    -> SelectMany "> Boundary" => #4
                        SubscribeSubject Distribution
                        -> Condition Uniform?
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value) => #1
                            #0, #1 -> Equal(Operand=StringProperty(Value=Uniform))
                            -> WorkflowOutput
                        -> SelectMany "> Boundary, Unif"
                            ExternalizedMapping(Lower, Upper)
                            -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                            -> Bonsai.Numerics.Distributions.Sample
                            -> Take(Count=1)
                            -> WorkflowOutput
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #2, #4 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> SelectMany Play
                    SubscribeSubject Sound_Duration
                    -> PropertyMapping(DueTime) => #1
                    WorkflowInput Source1
                    -> PropertyMapping(Value)
                    -> FloatProperty(Value=-0.327982366)
                    -> MulticastSubject Stim_Relative => #5
                    #5, #1 -> Bonsai.Shaders.Delay(DueTime=PT0.2S)
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> WorkflowOutput

                StringProperty(Value=Sound)
                -> MulticastSubject Trial_Epoch
            -> Disable SelectMany Delay
                WorkflowInput Source1 => #0
                SubscribeSubject Working_Memory_Type => #1
                -> Condition Fixed
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Fixed))
                    -> WorkflowOutput
                -> FloatProperty(Value=0.5) => #3
                #1 -> Condition Variable
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Variable))
                    -> WorkflowOutput
                -> SelectMany Create_Disc_Uni => #5
                    ExternalizedMapping(Lower, Upper)
                    -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=3)
                    -> Bonsai.Numerics.Distributions.Sample
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> Condition Option_1
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0.5) => #7
                #5 -> Condition Option_2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=2))
                    -> WorkflowOutput
                -> FloatProperty(Value=0.75) => #9
                #5 -> Condition Option_3
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=3))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #11
                #7, #9, #11, #3 -> Merge
                -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromSeconds
                  Expression: TimeSpan.FromSeconds(it)
                -> MulticastSubject Working_Memory_Delay
                -> PropertyMapping(DueTime) => #15
                #0, #15 -> Bonsai.Shaders.Delay(DueTime=PT0.5S)
                -> WorkflowOutput

                StringProperty(Value=Delay)
                -> MulticastSubject Trial_Epoch
            -> SelectMany Delay
                WorkflowInput Source1 => #0
                SubscribeSubject Working_Memory_Type => #1
                -> Condition Fixed
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Fixed))
                    -> WorkflowOutput
                -> FloatProperty(Value=0.5) => #3
                #1 -> Condition Variable
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Variable))
                    -> WorkflowOutput
                -> SelectMany Create_Disc_Uni => #5
                    ExternalizedMapping(Lower, Upper)
                    -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=4)
                    -> Bonsai.Numerics.Distributions.Sample
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> Condition Option_1
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0.5) => #7
                #5 -> Condition Option_2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=2))
                    -> WorkflowOutput
                -> FloatProperty(Value=0.75) => #9
                #5 -> Condition Option_3
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=3))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #11
                #5 -> Condition Option_4
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=4))
                    -> WorkflowOutput
                -> FloatProperty(Value=1.25) => #13
                #7, #9, #11, #13, #3 -> Merge
                -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromSeconds
                  Expression: TimeSpan.FromSeconds(it)
                -> MulticastSubject Working_Memory_Delay
                -> PropertyMapping(DueTime) => #17
                #0, #17 -> Bonsai.Shaders.Delay(DueTime=PT0.75S)
                -> WorkflowOutput

                StringProperty(Value=Delay)
                -> MulticastSubject Trial_Epoch
            -> SelectMany Air_Puff
                Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample
                -> Take(Count=1) => #2
                SubscribeSubject P_Right => #3
                #2, #3 -> Zip => #4
                -> LessThan
                -> Condition True => #6
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Condition Anti
                    SubscribeSubject Air_Puff_Contingency => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Anti))
                    -> WorkflowOutput
                -> StringProperty(Value=Right) => #8
                #6 -> Condition Pro
                    SubscribeSubject Air_Puff_Contingency => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Pro))
                    -> WorkflowOutput
                -> StringProperty(Value=Right) => #10
                #4 -> GreaterThanOrEqual
                -> Condition True => #12
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Condition Anti
                    SubscribeSubject Air_Puff_Contingency => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Anti))
                    -> WorkflowOutput
                -> StringProperty(Value=Left) => #14
                #10, #14 -> Merge
                -> MulticastSubject Correct_Side
                -> SelectMany Right_Air_Puff => #17
                    WorkflowInput Source1
                    -> SelectMany Right_Pulses
                        Timer(DueTime=PT0S, Period=PT0.075S)
                        -> Take(Count=5)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform E
                          Expression: 'E'
                        -> MulticastSubject Arduino_Command
                        -> Delay(DueTime=PT0.5S)
                        -> WorkflowOutput
                    -> StringProperty(Value=Right)
                    -> WorkflowOutput
                #12 -> Condition Pro
                    SubscribeSubject Air_Puff_Contingency => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=Pro))
                    -> WorkflowOutput
                -> StringProperty(Value=Left) => #19
                #8, #19 -> Merge
                -> MulticastSubject Correct_Side
                -> SelectMany Left_Air_Puff => #22
                    WorkflowInput Source1
                    -> SelectMany Left_Pulses
                        Timer(DueTime=PT0S, Period=PT0.075S)
                        -> Take(Count=5)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform G
                          Expression: 'G'
                        -> MulticastSubject Arduino_Command
                        -> Delay(DueTime=PT0.5S)
                        -> WorkflowOutput
                    -> StringProperty(Value=Left)
                    -> WorkflowOutput
                #17, #22 -> Merge
                -> MulticastSubject Air_Puff_Side
                -> Take(Count=1)
                -> WorkflowOutput

                StringProperty(Value=Air_Puff)
                -> MulticastSubject Trial_Epoch
            -> SelectMany Go_Cue => #5
                WorkflowInput Source1 => #0
                SubscribeSubject Go_Cue_Dur
                -> PropertyMapping(DueTime) => #2
                #0, #2 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
                -> WorkflowOutput

                StringProperty(Value=Go_Cue)
                -> MulticastSubject Trial_Epoch
            -> SelectMany Response => #6
                SubscribeSubject Beam_1_Bool
                -> Condition False
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> StringProperty(Value=Left) => #2
                SubscribeSubject Beam_2_Bool
                -> Condition False
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> StringProperty(Value=Right) => #5
                #2, #5 -> Merge => #6
                SubscribeSubject Air_Puff_Contingency => #7
                -> Equal(Operand=StringProperty(Value=Pro)) => #8
                SubscribeSubject Air_Puff_Side => #9
                -> Equal(Operand=StringProperty(Value=Left)) => #10
                #8, #10 -> Zip
                -> LogicalAnd => #12
                #9 -> Equal(Operand=StringProperty(Value=Right)) => #13
                #8, #13 -> Zip
                -> LogicalAnd => #15
                #7 -> Equal(Operand=StringProperty(Value=Anti)) => #16
                #16, #10 -> Zip
                -> LogicalAnd => #18
                #16, #13 -> Zip
                -> LogicalAnd => #20
                SubscribeSubject Agent_Sim
                -> Condition True
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany Decision => #23
                    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                    -> Bonsai.Numerics.Distributions.Sample => #1
                    SubscribeSubject Agent_Performance
                    -> PropertyMapping(Value) => #3
                    #1, #3 -> LessThan(Operand=DoubleProperty(Value=0.7)) => #4
                    -> Condition True
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> SelectMany Correct_Choice => #6
                        SubscribeSubject Air_Puff_Side => #0
                        -> Equal(Operand=StringProperty(Value=Left)) => #1
                        SubscribeSubject Air_Puff_Contingency => #2
                        -> Equal(Operand=StringProperty(Value=Pro)) => #3
                        #1, #3 -> CombineLatest
                        -> LogicalAnd
                        -> Condition => #6
                            WorkflowInput Source1
                            -> WorkflowOutput
                        #2 -> Equal(Operand=StringProperty(Value=Anti)) => #7
                        #1, #7 -> CombineLatest
                        -> LogicalAnd
                        -> Condition => #10
                            WorkflowInput Source1
                            -> WorkflowOutput
                        #0 -> Equal(Operand=StringProperty(Value=Right)) => #11
                        #11, #3 -> CombineLatest
                        -> LogicalAnd
                        -> Condition => #14
                            WorkflowInput Source1
                            -> WorkflowOutput
                        #14, #10 -> Merge
                        -> StringProperty(Value=Right) => #16
                        #11, #7 -> CombineLatest
                        -> LogicalAnd
                        -> Condition => #19
                            WorkflowInput Source1
                            -> WorkflowOutput
                        #6, #19 -> Merge
                        -> StringProperty(Value=Left) => #21
                        #16, #21 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #4 -> Condition False
                        WorkflowInput Source1
                        -> BitwiseNot
                        -> WorkflowOutput
                    -> SelectMany Guess => #8
                        Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                        -> Bonsai.Numerics.Distributions.Sample => #1
                        SubscribeSubject Agent_Right_Bias
                        -> PropertyMapping(Value) => #3
                        #1, #3 -> LessThan(Operand=DoubleProperty(Value=0.5)) => #4
                        -> Condition True
                            WorkflowInput Source1
                            -> WorkflowOutput
                        -> StringProperty(Value=Right) => #6
                        #4 -> Condition False
                            WorkflowInput Source1
                            -> BitwiseNot
                            -> WorkflowOutput
                        -> StringProperty(Value=Left) => #8
                        #6, #8 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #6, #8 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #6, #23 -> Merge
                -> Take(Count=1)
                -> MulticastSubject First_Lick => #26
                -> Equal(Operand=StringProperty(Value=Left)) => #27
                #27, #12 -> Zip
                -> LogicalAnd
                -> Condition "Pro, Lick = L, Puff = L " => #30
                    WorkflowInput Source1
                    -> WorkflowOutput
                #15, #27 -> Zip
                -> LogicalAnd
                -> Condition "Pro, Lick = L, Puff = R " => #33
                    WorkflowInput Source1
                    -> WorkflowOutput
                #18, #27 -> Zip
                -> LogicalAnd
                -> Condition "Anti, Lick = L, Puff = L" => #36
                    WorkflowInput Source1
                    -> WorkflowOutput
                #20, #27 -> Zip
                -> LogicalAnd
                -> Condition "Anti, Lick = L, Puff = R" => #39
                    WorkflowInput Source1
                    -> WorkflowOutput
                #26 -> Equal(Operand=StringProperty(Value=Right)) => #40
                #40, #12 -> Zip
                -> LogicalAnd
                -> Condition "Pro, Lick = R, Puff = L" => #43
                    WorkflowInput Source1
                    -> WorkflowOutput
                #40, #15 -> Zip
                -> LogicalAnd
                -> Condition "Pro, Lick = R, Puff = R" => #46
                    WorkflowInput Source1
                    -> WorkflowOutput
                #20, #40 -> Zip
                -> LogicalAnd
                -> Condition "Anti, Lick = R, Puff = R" => #49
                    WorkflowInput Source1
                    -> WorkflowOutput
                #33, #36, #43, #49 -> Merge
                -> BooleanProperty(Value=false) => #51
                #40, #18 -> Zip
                -> LogicalAnd
                -> Condition "Anti, Lick = R, Puff = L" => #54
                    WorkflowInput Source1
                    -> WorkflowOutput
                #30, #39, #46, #54 -> Merge
                -> BooleanProperty(Value=true) => #56
                #56, #51 -> Merge
                -> Take(Count=1)
                -> MulticastSubject Correct
                -> WorkflowOutput

                StringProperty(Value=Response_Window)
                -> MulticastSubject Trial_Epoch
            -> BooleanProperty(Value=false) => #7
            SubscribeSubject Response_Window
            -> PropertyMapping(DueTime) => #9
            #5, #9 -> Delay(DueTime=PT3S)
            -> BooleanProperty(Value=true) => #11
            #7, #11 -> Merge
            -> Take(Count=1)
            -> MulticastSubject Abort_Trial => #14
            -> Condition Response
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> SelectMany Feedback => #16
                SubscribeSubject Correct => #0
                -> Condition Yes
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany Success
                    SubscribeSubject First_Lick => #0
                    -> Condition Left
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Left))
                        -> WorkflowOutput
                    -> SelectMany Reward_Left => #2
                        WorkflowInput Source1
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject Left_Valve => #2
                        SubscribeSubject Left_Valve_Time
                        -> PropertyMapping(DueTime) => #4
                        #2, #4 -> Bonsai.Shaders.Delay(DueTime=PT0.001S)
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject Left_Valve => #7
                        ExternalizedMapping(Value) => #8
                        #7, #8 -> StringProperty(Value=Left)
                        -> MulticastSubject Reward_Side
                        -> WorkflowOutput
                    #0 -> Condition Right
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=StringProperty(Value=Right))
                        -> WorkflowOutput
                    -> SelectMany Reward_Right => #4
                        WorkflowInput Source1
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject Right_Valve => #2
                        SubscribeSubject Left_Valve_Time
                        -> PropertyMapping(DueTime) => #4
                        #2, #4 -> Bonsai.Shaders.Delay(DueTime=PT0.001S)
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject Right_Valve => #7
                        ExternalizedMapping(Value) => #8
                        #7, #8 -> StringProperty(Value=Right)
                        -> MulticastSubject Reward_Side
                        -> WorkflowOutput
                    #2, #4 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput

                    StringProperty(Value=Reward)
                    -> MulticastSubject Trial_Epoch
                -> StringProperty(Value=Correct) => #3
                #0 -> Condition No
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> SelectMany Failure
                    WorkflowInput Source1 => #0
                    SubscribeSubject Timeout_Duration
                    -> PropertyMapping(DueTime) => #2
                    #0, #2 -> Bonsai.Shaders.Delay(DueTime=PT3S)
                    -> WorkflowOutput

                    StringProperty(Value=Timeout)
                    -> MulticastSubject Trial_Epoch
                -> StringProperty(Value=Incorrect) => #6
                #3, #6 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput

                StringProperty(Value=Feedback)
                -> MulticastSubject Trial_Epoch
            #14 -> Condition Abort
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=Abort) => #18
            #16, #18 -> Merge
            -> Take(Count=1)
            -> MulticastSubject Trial_Outcome
            -> WorkflowOutput
            #5, #6 -> GroupWorkflow Record_Latency
                SubscribeSubject Trial_End
                -> Condition => #1
                    WorkflowInput Source1
                    -> WorkflowOutput
                WorkflowInput Source1
                -> SelectMany Start_Timer => #3
                    Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.001S)
                    -> WorkflowOutput
                WorkflowInput Source2 => #4
                #1, #4 -> Merge => #5
                #3, #5 -> TakeUntil
                -> TakeLast(Count=1)
                -> MulticastSubject Response_Latency
                -> WorkflowOutput
        #2, #4, #6, #8, #10 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    #2, #4 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> SelectMany End_Trial
    WorkflowInput Source1
    -> BooleanProperty(Value=true)
    -> Take(Count=1)
    -> MulticastSubject Trial_End
    -> SelectMany Log_Trial_End
        StringProperty(Value=Trial_End) => #0
        SubscribeSubject Trial_Number
        -> Bonsai.Scripting.IronPython.PythonTransform To_Str => #2
          Script:
            @returns(str)
            def process(value):
                return str(value)
        #0, #2 -> CombineLatest
        -> Take(Count=1)
        -> MulticastSubject Event_Log
        -> WorkflowOutput
    -> SelectMany Increment_Trial
        SubscribeSubject Trial_Number => #0
        IntProperty(Value=1) => #1
        #0, #1 -> Zip
        -> Add
        -> Take(Count=1)
        -> MulticastSubject Trial_Number
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput

    StringProperty(Value=Inter_Trial_Interval)
    -> MulticastSubject Trial_Epoch
-> Repeat => #21
SubscribeSubject Launch_Protocol
-> Condition => #23
    WorkflowInput Source1
    -> WorkflowOutput
#21, #23 -> SubscribeWhen => #24
#24, #14 -> TakeUntil
-> WorkflowOutput
#12 -> Delay(DueTime=PT2S)
-> PublishSubject Close_Files

GroupWorkflow Anti_Bias
    SubscribeSubject First_Lick => #0
    -> Condition Left
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=StringProperty(Value=Left))
        -> WorkflowOutput
    -> FloatProperty(Value=1) => #2
    #0 -> Condition Right
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=StringProperty(Value=Right))
        -> WorkflowOutput
    -> FloatProperty(Value=0) => #4
    #2, #4 -> Merge => #5
    SubscribeSubject Abort_Trial
    -> Condition False => #7
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    #5, #7 -> Sample => #8
    SubscribeSubject Anti_Bias_Window
    -> PropertyMapping(Value)
    -> IntProperty(Value=30) => #11
    FloatProperty(Value=0) => #12
    #12, #11 -> Zip
    -> Bonsai.Scripting.IronPython.PythonTransform Gen_floats
      Script:
        @returns(list)
        def process(value):
          float_0 = value[0]
          window_size = value[1]
          result = []
          for _ in range(window_size):
            result.append(float_0)
          return result
    -> Merge
    -> Bonsai.Scripting.IronPython.PythonTransform NaN => #16
      Script:
        from System import Single

        @returns(Single)
        def process(value):
          return (Single(float.NaN))
    #8, #16 -> Merge => #17
    SubscribeSubject Stim_Relative => #18
    -> Condition <0 => #19
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=Boundary)) => #1
        #0, #1 -> LessThanOrEqual(Operand=FloatProperty(Value=0))
        -> WorkflowOutput
    -> Condition "Contingency - Low = L, High = R" => #20
        SubscribeSubject Sound_Contingency => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=StringProperty(Value=Low_Left_High_Right))
        -> WorkflowOutput
    #19 -> Condition "Contingency - Low = R, High = L" => #21
        SubscribeSubject Sound_Contingency => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=StringProperty(Value=Low_Right_High_Left))
        -> WorkflowOutput
    #18 -> Condition >0 => #22
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> GreaterThan(Operand=FloatProperty(Value=0))
        -> WorkflowOutput
    -> Condition "Contingency - Low = L, High = R" => #23
        SubscribeSubject Sound_Contingency => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=StringProperty(Value=Low_Left_High_Right))
        -> WorkflowOutput
    #21, #23 -> Merge
    -> FloatProperty(Value=0) => #25
    #22 -> Condition "Contingency - Low = R, High = L" => #26
        SubscribeSubject Sound_Contingency => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=StringProperty(Value=Low_Right_High_Left))
        -> WorkflowOutput
    #20, #26 -> Merge
    -> FloatProperty(Value=1) => #28
    #28, #25 -> Merge
    -> Disable Skip(Count=1)
    -> Condition SOUND_CAT => #31
        SubscribeSubject Protocol => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=StringProperty(Value=SOUND_CAT))
        -> WorkflowOutput
    SubscribeSubject Anti_Bias_Window
    -> PropertyMapping(Count) => #33
    #17, #33 -> BufferCount(Count=30, Skip=1)
    -> SelectMany Count_Hit_Left
        WorkflowInput Source1
        -> Merge
        -> ToArray
        -> MulticastSubject Hit_Left
        -> WorkflowOutput
    -> Merge
    SubscribeSubject Anti_Bias_Window
    -> PropertyMapping(Count) => #38
    SubscribeSubject Air_Puff_Side => #39
    -> Condition Left => #40
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=StringProperty(Value=Left))
        -> WorkflowOutput
    -> Condition Pro => #41
        ExternalizedMapping(Value) => #0
        SubscribeSubject Air_Puff_Contingency => #1
        #1, #0 -> Equal(Operand=StringProperty(Value=Pro))
        -> WorkflowOutput
    #40 -> Condition Anti => #42
        ExternalizedMapping(Value) => #0
        SubscribeSubject Air_Puff_Contingency => #1
        #1, #0 -> Equal(Operand=StringProperty(Value=Anti))
        -> WorkflowOutput
    #39 -> Condition Right => #43
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=StringProperty(Value=Right))
        -> WorkflowOutput
    -> Condition Anti => #44
        ExternalizedMapping(Value) => #0
        SubscribeSubject Air_Puff_Contingency => #1
        #1, #0 -> Equal(Operand=StringProperty(Value=Anti))
        -> WorkflowOutput
    #41, #44 -> Merge
    -> FloatProperty(Value=1) => #46
    #43 -> Condition Pro => #47
        ExternalizedMapping(Value) => #0
        SubscribeSubject Air_Puff_Contingency => #1
        #1, #0 -> Equal(Operand=StringProperty(Value=Pro))
        -> WorkflowOutput
    #42, #47 -> Merge
    -> FloatProperty(Value=0) => #49
    #46, #49 -> Merge
    -> Condition PRO_ANTI => #51
        SubscribeSubject Protocol => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=StringProperty(Value=PRO_ANTI))
        -> WorkflowOutput
    #31, #51 -> Merge => #52
    #52, #7 -> Sample => #53
    #53, #16 -> Merge => #54
    #54, #38 -> BufferCount(Count=30, Skip=1)
    -> SelectMany Count_Rule_Left
        WorkflowInput Source1
        -> Merge
        -> ToArray
        -> MulticastSubject Rule_Left
        -> WorkflowOutput
    -> Merge

    SubscribeSubject Hit_Left => #58
    SubscribeSubject Rule_Left => #59
    -> SelectMany Antibias_Params => #60
        SubscribeSubject Anti_Bias_Window => #0
        SubscribeSubject Anti_Bias_Exp_Rate => #1
        SubscribeSubject Anti_Bias_Sigmoid_Slope_0 => #2
        #0, #1, #2 -> Zip
        -> WorkflowOutput
    #58, #59, #60 -> Zip
    -> Bonsai.Scripting.IronPython.PythonTransform Gen_P_Right_V2 => #62
      Description:
        Takes 3 inputs:
        - array of previous left choices
        - array of previous a priori left
        - tuple of 3 items: trials back, exponential rate and sigmoid slope
        Outputs P(Right)
      Script:
        @returns(float)
        def process(value):
          import math
          hit_left = value[0] #
          rule_left = value[1] #
          diff = [e-rule_left[c] for c,e in enumerate(hit_left)] # difference between hit left and a priori left
          diff_reverse = diff[::-1] # reverse order of incoming array to get earliest trials first

          # weigh this diff_reverse array with an exponential kernel that emphasizes recent history
          trials_back = value[2][0] # set size of exponential window
          rate = value[2][1] # set rate of exponential distribution
          kernel_window = [x / 10.0 for x in range(0, trials_back, 1)] # create kernel range, divide by 10 to capture most releant section of exponential function
          exp_kernel = [rate*(math.exp(-rate*x)) for x in kernel_window] # calculate exp fct for every kernel value
          exp_kernel = [x/sum(exp_kernel) for x in exp_kernel] # normalise
          bias =  sum([diff_reverse[i] * exp_kernel[i] for i in range(len(diff_reverse)) if diff_reverse[i] == diff_reverse[i] and exp_kernel[i] == exp_kernel[i]]) # calculate dot product of diff_reverse with exp_kernel using list comprehension, ignores NaN values
          # bias --> positive means left-bias, negative means right bias

          # pass this bias through a sigmoid function to obtain p_right
          slope_0 = value[2][2] # slope of sigmoid at x = 0
          beta = slope_0 * 4 # follows naturally from differentiation
          p_right = 1 / (1+math.exp(-beta*bias))
          return p_right
    -> Condition AntiBias_On => #63
        SubscribeSubject Anti_Bias
        -> WorkflowOutput
    #62 -> Condition AntiBias_Off
        SubscribeSubject Anti_Bias
        -> BitwiseNot
        -> WorkflowOutput
    -> DoubleProperty(Value=0.5) => #65
    #63, #65 -> Merge
    -> MulticastSubject P_Right

GroupWorkflow Set_Air_Puff_Contingency
    IntProperty(Value=0)
    -> BehaviorSubject State_Counter

    IntProperty(Value=0)
    -> BehaviorSubject Air_Puff_Contingency_Counter

    FloatProperty(Value=0)
    -> BehaviorSubject Window_Average

    SubscribeSubject Air_Puff_Contingency_Rule => #6
    -> Condition Pro_Only
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=StringProperty(Value=Pro_Only))
        -> WorkflowOutput
    -> SelectMany "Rule = Pro" => #8
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> StringProperty(Value=Pro)
        -> MulticastSubject Air_Puff_Contingency
        -> WorkflowOutput
    #6 -> Condition Anti_Only
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=StringProperty(Value=Anti_Only))
        -> WorkflowOutput
    -> SelectMany "Rule = Anti" => #10
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> StringProperty(Value=Anti)
        -> MulticastSubject Air_Puff_Contingency
        -> WorkflowOutput
    #6 -> Condition Random_Alternation
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=StringProperty(Value=Random_Alternation))
        -> WorkflowOutput
    -> SelectMany Random => #12
        SubscribeSubject Trial_End
        -> Condition When_False
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany Fire_Distribution
            Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
            -> WorkflowOutput
        -> Bonsai.Numerics.Distributions.Sample => #3
        -> Condition 0
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> StringProperty(Value=Pro) => #5
        #3 -> Condition 1
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> StringProperty(Value=Anti) => #7
        #5, #7 -> Merge
        -> MulticastSubject Air_Puff_Contingency
        -> WorkflowOutput
    #6 -> Condition Blocks_30
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=StringProperty(Value=Blocks_30))
        -> WorkflowOutput
    -> SelectMany Blocks_30 => #14
        ExternalizedMapping(Value(DisplayName=Min_Block_Length))
        -> IntProperty(Value=30)
        -> MulticastSubject Min_Block_Length

        ExternalizedMapping(Value(DisplayName=Window_Perf_Size))
        -> IntProperty(Value=20)
        -> MulticastSubject Window_Perf_Size

        ExternalizedMapping(Value)
        -> FloatProperty(Value=0.8)
        -> MulticastSubject Block_Performance_Threshold

        SubscribeSubject Air_Puff_Contingency => #9
        SubscribeSubject Window_Perf_Size
        -> PropertyMapping(Count) => #11
        SubscribeSubject Abort_Trial => #12
        -> Condition No
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany Correct? => #14
            SubscribeSubject Correct
            -> Take(Count=1)
            -> WorkflowOutput
        -> Condition Yes
            WorkflowInput Source1
            -> WorkflowOutput
        -> FloatProperty(Value=1) => #16
        #14 -> Condition No => #17
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #12 -> Condition Yes => #18
            WorkflowInput Source1
            -> WorkflowOutput
        #17, #18 -> Merge
        -> FloatProperty(Value=0) => #20
        #16, #20 -> Merge => #21
        -> SelectMany Switch => #22
            WorkflowInput Source1 => #0
            SubscribeSubject Min_Block_Length
            -> PropertyMapping(State_Count) => #2
            #0, #2 -> Condition
                SubscribeSubject State_Counter => #0
                SubscribeSubject Window_Average => #1
                ExternalizedMapping(Value(DisplayName=State_Count)) => #2
                #0, #2 -> GreaterThanOrEqual(Operand=IntProperty(Value=30)) => #3
                SubscribeSubject Block_Performance_Threshold
                -> PropertyMapping(Value) => #5
                #1, #5 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #6
                #3, #6 -> CombineLatest
                -> LogicalAnd
                -> Take(Count=1)
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        #22, #9 -> Zip
        -> Bonsai.Scripting.IronPython.PythonTransform Switch_Contingency
          Script:
            @returns(str)
            def process(value):
              current_contingency = value[1]
              if current_contingency == 'Pro':
                result = 'Anti'
              else:
                result = 'Pro'
              return result
        -> MulticastSubject Air_Puff_Contingency => #25
        #22 -> SelectMany Reset_Counter => #26
            SubscribeSubject State_Counter => #0
            WorkflowInput Source1 => #1
            #1, #0 -> Zip
            -> MemberSelector(Selector=Item2)
            -> Negate
            -> Take(Count=1)
            -> WorkflowOutput
        #22 -> SelectMany Gen_0s => #27
            FloatProperty(Value=0) => #0
            SubscribeSubject Window_Perf_Size
            -> PropertyMapping(Value)
            -> IntProperty(Value=20) => #3
            #0, #3 -> Zip
            -> Bonsai.Scripting.IronPython.PythonTransform Gen_list
              Script:
                @returns(list)
                def process(value):
                  float_0 = value[0]
                  window_size = value[1]
                  result = []
                  for _ in range(window_size):
                    result.append(float_0)
                  return result
            -> Merge
            -> Bonsai.Scripting.IronPython.PythonTransform To_float
              Script:
                from System import Single

                @returns(Single)
                def process(value):
                  return 0.0
            -> WorkflowOutput
        #21, #27 -> Merge => #28
        #28, #11 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0)
        -> MulticastSubject Window_Average
        -> StringProperty => #33
        #21 -> SelectMany Keep
            WorkflowInput Source1 => #0
            SubscribeSubject Min_Block_Length => #1
            -> PropertyMapping(State_Count) => #2
            #0, #2 -> Condition => #3
                SubscribeSubject State_Counter => #0
                ExternalizedMapping(Value(DisplayName=State_Count)) => #1
                #0, #1 -> LessThan(Operand=IntProperty(Value=30))
                -> Take(Count=1)
                -> WorkflowOutput
            #1 -> PropertyMapping(State_Count) => #4
            #0, #4 -> Condition => #5
                SubscribeSubject State_Counter => #0
                SubscribeSubject Window_Average => #1
                ExternalizedMapping(Value(DisplayName=State_Count)) => #2
                #0, #2 -> GreaterThanOrEqual(Operand=IntProperty(Value=30)) => #3
                ExternalizedMapping(Value(DisplayName=Window_Perf)) => #4
                #1, #4 -> LessThan(Operand=FloatProperty(Value=0.7)) => #5
                #3, #5 -> CombineLatest
                -> LogicalAnd
                -> Take(Count=1)
                -> WorkflowOutput
            #3, #5 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> IntProperty(Value=1) => #35
        #35, #26 -> Merge
        -> Accumulate
        -> Subtract(Operand=IntProperty(Value=1))
        -> MulticastSubject State_Counter
        -> StringProperty => #40
        #25, #33, #40 -> Merge
        -> WorkflowOutput
    #6 -> Condition Blocks_15
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=StringProperty(Value=Blocks_15))
        -> WorkflowOutput
    -> SelectMany Blocks_15 => #16
        ExternalizedMapping(Value(DisplayName=Min_Block_Length))
        -> IntProperty(Value=15)
        -> MulticastSubject Min_Block_Length

        ExternalizedMapping(Value(DisplayName=Window_Perf_Size))
        -> IntProperty(Value=15)
        -> MulticastSubject Window_Perf_Size

        ExternalizedMapping(Value)
        -> FloatProperty(Value=0.8)
        -> MulticastSubject Block_Performance_Threshold

        SubscribeSubject Air_Puff_Contingency => #9
        SubscribeSubject Window_Perf_Size
        -> PropertyMapping(Count) => #11
        SubscribeSubject Abort_Trial => #12
        -> Condition No
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany Correct? => #14
            SubscribeSubject Correct
            -> Take(Count=1)
            -> WorkflowOutput
        -> Condition Yes
            WorkflowInput Source1
            -> WorkflowOutput
        -> FloatProperty(Value=1) => #16
        #14 -> Condition No => #17
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #12 -> Condition Yes => #18
            WorkflowInput Source1
            -> WorkflowOutput
        #17, #18 -> Merge
        -> FloatProperty(Value=0) => #20
        #16, #20 -> Merge => #21
        -> SelectMany Switch => #22
            WorkflowInput Source1 => #0
            SubscribeSubject Min_Block_Length
            -> PropertyMapping(State_Count) => #2
            #0, #2 -> Condition
                SubscribeSubject State_Counter => #0
                SubscribeSubject Window_Average => #1
                ExternalizedMapping(Value(DisplayName=State_Count)) => #2
                #0, #2 -> GreaterThanOrEqual(Operand=IntProperty(Value=15)) => #3
                SubscribeSubject Block_Performance_Threshold
                -> PropertyMapping(Value) => #5
                #1, #5 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #6
                #3, #6 -> CombineLatest
                -> LogicalAnd
                -> Take(Count=1)
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        #22, #9 -> Zip
        -> Bonsai.Scripting.IronPython.PythonTransform Switch_Contingency
          Script:
            @returns(str)
            def process(value):
              current_contingency = value[1]
              if current_contingency == 'Pro':
                result = 'Anti'
              else:
                result = 'Pro'
              return result
        -> MulticastSubject Air_Puff_Contingency => #25
        #22 -> SelectMany Reset_Counter => #26
            SubscribeSubject State_Counter => #0
            WorkflowInput Source1 => #1
            #1, #0 -> Zip
            -> MemberSelector(Selector=Item2)
            -> Negate
            -> Take(Count=1)
            -> WorkflowOutput
        #22 -> SelectMany Gen_0s => #27
            FloatProperty(Value=0) => #0
            SubscribeSubject Window_Perf_Size
            -> PropertyMapping(Value)
            -> IntProperty(Value=15) => #3
            #0, #3 -> Zip
            -> Bonsai.Scripting.IronPython.PythonTransform Gen_list
              Script:
                @returns(list)
                def process(value):
                  float_0 = value[0]
                  window_size = value[1]
                  result = []
                  for _ in range(window_size):
                    result.append(float_0)
                  return result
            -> Merge
            -> Bonsai.Scripting.IronPython.PythonTransform To_float
              Script:
                from System import Single

                @returns(Single)
                def process(value):
                  return 0.0
            -> WorkflowOutput
        #21, #27 -> Merge => #28
        #28, #11 -> Bonsai.Dsp.Buffer(Count=15, Skip=1)
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0)
        -> MulticastSubject Window_Average
        -> StringProperty => #33
        #21 -> SelectMany Keep
            WorkflowInput Source1 => #0
            SubscribeSubject Min_Block_Length => #1
            -> PropertyMapping(State_Count) => #2
            #0, #2 -> Condition => #3
                SubscribeSubject State_Counter => #0
                ExternalizedMapping(Value(DisplayName=State_Count)) => #1
                #0, #1 -> LessThan(Operand=IntProperty(Value=15))
                -> Take(Count=1)
                -> WorkflowOutput
            #1 -> PropertyMapping(State_Count) => #4
            #0, #4 -> Condition => #5
                SubscribeSubject State_Counter => #0
                SubscribeSubject Window_Average => #1
                ExternalizedMapping(Value(DisplayName=State_Count)) => #2
                #0, #2 -> GreaterThanOrEqual(Operand=IntProperty(Value=15)) => #3
                ExternalizedMapping(Value(DisplayName=Window_Perf)) => #4
                #1, #4 -> LessThan(Operand=FloatProperty(Value=0.7)) => #5
                #3, #5 -> CombineLatest
                -> LogicalAnd
                -> Take(Count=1)
                -> WorkflowOutput
            #3, #5 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> IntProperty(Value=1) => #35
        #35, #26 -> Merge
        -> Accumulate
        -> Subtract(Operand=IntProperty(Value=1))
        -> MulticastSubject State_Counter
        -> StringProperty => #40
        #25, #33, #40 -> Merge
        -> WorkflowOutput
    #8, #10, #14, #16, #12 -> Merge
    -> WorkflowOutput

GroupWorkflow Optostim
    SubscribeSubject Opto_Onset_1 => #0
    SubscribeSubject Trial_Epoch => #1
    #0, #1 -> CombineLatest
    -> Equal => #3
    SubscribeSubject Experiment_End
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany End_Opto => #6
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.Expressions.ExpressionTransform Stop_Fiber
          Expression: 's'
        -> MulticastSubject Arduino_Mega_Command => #2
        #0 -> Bonsai.Scripting.Expressions.ExpressionTransform Stop_Mask
          Expression: 'k'
        -> MulticastSubject Arduino_Mega_Command => #4
        #0 -> SelectMany Stop_Optostim
            IncludeWorkflow(Path=Extensions\basicMessage.bonsai, Trial_Command=0)
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
          Expression: 'x'
        #2, #4, #6 -> Merge
        -> Disable Take(Count=1)
        -> WorkflowOutput
    SubscribeSubject Opto_Onset_2 => #7
    #7, #1 -> CombineLatest
    -> Equal => #9
    #3, #9 -> Zip
    -> BitwiseOr
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Skip(Count=1)
    -> Condition "Opto_ON ?" => #14
        SubscribeSubject Opto_ON
        -> WorkflowOutput
    -> Condition Fiber_Opto
        SubscribeSubject Opto_Type => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=StringProperty(Value=Fiber))
        -> WorkflowOutput
    -> SelectMany Fiber(Description="Should be x% of trials during opto sessions")
        Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
        -> Bonsai.Numerics.Distributions.Sample => #1
        SubscribeSubject Perc_Opto_Trials
        -> Divide(Operand=FloatProperty(Value=100)) => #3
        #1, #3 -> Zip => #4
        -> Condition
            WorkflowInput Source1
            -> GreaterThan
            -> WorkflowOutput
        -> SelectMany Nothing => #6
            WorkflowInput Source1
            -> BooleanProperty(Value=false)
            -> MulticastSubject Fiber
            -> WorkflowOutput
        #4 -> Condition
            WorkflowInput Source1
            -> LessThanOrEqual
            -> WorkflowOutput
        -> SelectMany Fiber_ON => #8
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform Fiber_ON
              Expression: 'f'
            -> MulticastSubject Arduino_Mega_Command
            -> BooleanProperty(Value=true)
            -> MulticastSubject Fiber
            -> WorkflowOutput
        #6, #8 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany "Offset ?"
        SubscribeSubject Opto_Offset_1 => #0
        SubscribeSubject Trial_Epoch => #1
        #0, #1 -> CombineLatest
        -> Equal => #3
        SubscribeSubject Opto_Offset_2 => #4
        #4, #1 -> CombineLatest
        -> Equal => #6
        #3, #6 -> Zip
        -> BitwiseOr
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Stop_Fiber => #18
        SubscribeSubject Fiber => #0
        -> Condition If_ON
            WorkflowInput Source1
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform Ramp_Down_Fiber => #2
          Expression: 'r'
        #0 -> Condition If_OFF
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform Nothing => #4
          Expression: 's'
        #2, #4 -> Merge
        -> MulticastSubject Arduino_Mega_Command
        -> Take(Count=1)
        -> WorkflowOutput
    #14 -> SelectMany Mask(Description="Should be 100% of trials during opto sessions")
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform Mask_ON
          Expression: 'm'
        -> MulticastSubject Arduino_Mega_Command
        -> BooleanProperty(Value=true)
        -> MulticastSubject Mask
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany "Offset ?"
        SubscribeSubject Opto_Offset_1 => #0
        SubscribeSubject Trial_Epoch => #1
        #0, #1 -> CombineLatest
        -> Equal => #3
        SubscribeSubject Opto_Offset_2 => #4
        #4, #1 -> CombineLatest
        -> Equal => #6
        #3, #6 -> Zip
        -> BitwiseOr
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Stop_Mask => #21
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform Ramp_Down_Mask
          Expression: 't'
        -> MulticastSubject Arduino_Mega_Command
        -> Take(Count=1)
        -> WorkflowOutput
    #14 -> Condition Zapit_Opto
        SubscribeSubject Opto_Type => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=StringProperty(Value=Zapit))
        -> WorkflowOutput
    -> SelectMany Zapit(Description="Should be x% of trials during opto sessions")
        Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
        -> Bonsai.Numerics.Distributions.Sample => #1
        SubscribeSubject Perc_Opto_Trials
        -> Divide(Operand=FloatProperty(Value=100)) => #3
        #1, #3 -> Zip => #4
        -> Condition
            WorkflowInput Source1
            -> GreaterThan
            -> WorkflowOutput
        -> SelectMany Nothing => #6
            WorkflowInput Source1
            -> BooleanProperty(Value=false)
            -> MulticastSubject Zapit
            -> WorkflowOutput
        #4 -> Condition
            WorkflowInput Source1
            -> LessThanOrEqual
            -> WorkflowOutput
        -> SelectMany Zapit_ON => #8
            ExternalizedMapping
              conditionNum_channel
              laserOn_channel
              hardwareTriggered_channel
              logging_channel
              verbose_channel
              laser_ON
              hardwareTriggered_ON
              logging_ON
              verbose_ON
              conditionNum
              Trial_Command
            -> IncludeWorkflow
              Path=Extensions\Send_Samples.bonsai
              conditionNum_channel=true
              laserOn_channel=true
              hardwareTriggered_channel=true
              logging_channel=false
              Start_Delay_Channel=false
              Stim_Duration_Channel=false
              Laser_Power_Channel=false
              verbose_channel=true
              laser_ON=true
              hardwareTriggered_ON=false
              logging_ON=false
              Start_Delay_Seconds=0
              Laser_Power_mW=0
              Stim_Duration_Seconds=0
              verbose_ON=false
              conditionNum=1
              Trial_Command=1
            -> BooleanProperty(Value=true)
            -> MulticastSubject Zapit
            -> WorkflowOutput
        #6, #8 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany "Offset ?"
        SubscribeSubject Opto_Offset_1 => #0
        SubscribeSubject Trial_Epoch => #1
        #0, #1 -> CombineLatest
        -> Equal => #3
        SubscribeSubject Opto_Offset_2 => #4
        #4, #1 -> CombineLatest
        -> Equal => #6
        #3, #6 -> Zip
        -> BitwiseOr
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Stop_Optostim
        WorkflowInput Source1
        -> ObserveOn(Scheduler=TaskPoolScheduler)
        -> SelectMany Stop_Optostim
            IncludeWorkflow(Path=Extensions\basicMessage.bonsai, Trial_Command=0)
            -> Take(Count=1)
            -> WorkflowOutput
        -> WorkflowOutput
    -> Disable SelectMany Zapit_State? => #26
        IncludeWorkflow(Path=Extensions\Zapit_State.bonsai, Trial_Command=3)
        -> WorkflowOutput
    -> Disable Condition Off
        SubscribeSubject Server_Reply
        -> MemberSelector(Selector=Item2.Item1) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=WorkflowProperty<System.Byte>(Value=0))
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #28
      Expression: 'x'
    #18, #21, #28 -> Merge => #29
    #29, #6 -> TakeUntil
    -> WorkflowOutput
    #26 -> Disable Condition On
        SubscribeSubject Server_Reply
        -> MemberSelector(Selector=Item2.Item1) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=WorkflowProperty<System.Byte>(Value=1))
        -> WorkflowOutput
    -> Disable SelectMany End_Experiment
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=Crash_Message)) => #1
        #0, #1 -> StringProperty(Value=Stop_Optostim_Failed)
        -> Bonsai.IO.WriteLine
        -> BooleanProperty(Value=true)
        -> MulticastSubject Experiment_End
        -> WorkflowOutput

GroupWorkflow Dist_Check
    FloatProperty(Value=0) => #0
    SubscribeSubject Stim_Relative => #1
    -> GroupWorkflow "-0.75 : -0.50" => #2
        ExternalizedMapping(Value(DisplayName=Lower)) => #0
        ExternalizedMapping(Value(DisplayName=Upper)) => #1
        WorkflowInput Source1 => #2
        #2, #0 -> GreaterThanOrEqual(Operand=FloatProperty(Value=-0.75)) => #3
        #2, #1 -> LessThan(Operand=FloatProperty(Value=-0.5)) => #4
        #3, #4 -> Zip
        -> LogicalAnd => #6
        -> Condition True
            WorkflowInput Source1
            -> WorkflowOutput
        -> FloatProperty(Value=1) => #8
        #6 -> Condition False
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> FloatProperty(Value=0) => #10
        #8, #10 -> Merge => #11
        -> Accumulate => #12
        #11 -> SelectMany Trial_Number
            SubscribeSubject Trial_Number
            -> WorkflowOutput
        -> Accumulate => #14
        #12, #14 -> Zip
        -> Disable Divide
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    #1 -> GroupWorkflow "-0.5 : 0.25" => #3
        ExternalizedMapping(Value(DisplayName=Lower)) => #0
        ExternalizedMapping(Value(DisplayName=Upper)) => #1
        WorkflowInput Source1 => #2
        #2, #0 -> GreaterThanOrEqual(Operand=FloatProperty(Value=-0.5)) => #3
        #2, #1 -> LessThan(Operand=FloatProperty(Value=-0.25)) => #4
        #3, #4 -> Zip
        -> LogicalAnd => #6
        -> Condition True
            WorkflowInput Source1
            -> WorkflowOutput
        -> FloatProperty(Value=1) => #8
        #6 -> Condition False
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> FloatProperty(Value=0) => #10
        #8, #10 -> Merge => #11
        -> Accumulate => #12
        #11 -> SelectMany Trial_Number
            SubscribeSubject Trial_Number
            -> WorkflowOutput
        -> Accumulate => #14
        #12, #14 -> Zip
        -> Disable Divide
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    #1 -> GroupWorkflow "-0.25 : 0" => #4
        ExternalizedMapping(Value(DisplayName=Lower)) => #0
        ExternalizedMapping(Value(DisplayName=Upper)) => #1
        WorkflowInput Source1 => #2
        #2, #0 -> GreaterThanOrEqual(Operand=FloatProperty(Value=-0.25)) => #3
        #2, #1 -> LessThan(Operand=FloatProperty(Value=0)) => #4
        #3, #4 -> Zip
        -> LogicalAnd => #6
        -> Condition True
            WorkflowInput Source1
            -> WorkflowOutput
        -> FloatProperty(Value=1) => #8
        #6 -> Condition False
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> FloatProperty(Value=0) => #10
        #8, #10 -> Merge => #11
        -> Accumulate => #12
        #11 -> SelectMany Trial_Number
            SubscribeSubject Trial_Number
            -> WorkflowOutput
        -> Accumulate => #14
        #12, #14 -> Zip
        -> Disable Divide
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    #1 -> GroupWorkflow "0 : 0.25" => #5
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=Lower)) => #1
        ExternalizedMapping(Value(DisplayName=Upper)) => #2
        #0, #2 -> LessThanOrEqual(Operand=FloatProperty(Value=0.25)) => #3
        #0, #1 -> GreaterThan(Operand=FloatProperty(Value=0)) => #4
        #4, #3 -> Zip
        -> LogicalAnd => #6
        -> Condition True
            WorkflowInput Source1
            -> WorkflowOutput
        -> FloatProperty(Value=1) => #8
        #6 -> Condition False
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> FloatProperty(Value=0) => #10
        #8, #10 -> Merge => #11
        -> Accumulate => #12
        #11 -> SelectMany Trial_Number
            SubscribeSubject Trial_Number
            -> WorkflowOutput
        -> Accumulate => #14
        #12, #14 -> Zip
        -> Disable Divide
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    #1 -> GroupWorkflow "0.25 : 0.50" => #6
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=Lower)) => #1
        ExternalizedMapping(Value(DisplayName=Upper)) => #2
        #0, #2 -> LessThanOrEqual(Operand=FloatProperty(Value=0.5)) => #3
        #0, #1 -> GreaterThan(Operand=FloatProperty(Value=0.25)) => #4
        #4, #3 -> Zip
        -> LogicalAnd => #6
        -> Condition True
            WorkflowInput Source1
            -> WorkflowOutput
        -> FloatProperty(Value=1) => #8
        #6 -> Condition False
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> FloatProperty(Value=0) => #10
        #8, #10 -> Merge => #11
        -> Accumulate => #12
        #11 -> SelectMany Trial_Number
            SubscribeSubject Trial_Number
            -> WorkflowOutput
        -> Accumulate => #14
        #12, #14 -> Zip
        -> Disable Divide
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    #1 -> GroupWorkflow "0.50 : 0.75" => #7
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=Lower)) => #1
        ExternalizedMapping(Value(DisplayName=Upper)) => #2
        #0, #2 -> LessThanOrEqual(Operand=FloatProperty(Value=0.75)) => #3
        #0, #1 -> GreaterThan(Operand=FloatProperty(Value=0.5)) => #4
        #4, #3 -> Zip
        -> LogicalAnd => #6
        -> Condition True
            WorkflowInput Source1
            -> WorkflowOutput
        -> FloatProperty(Value=1) => #8
        #6 -> Condition False
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> FloatProperty(Value=0) => #10
        #8, #10 -> Merge => #11
        -> Accumulate => #12
        #11 -> SelectMany Trial_Number
            SubscribeSubject Trial_Number
            -> WorkflowOutput
        -> Accumulate => #14
        #12, #14 -> Zip
        -> Disable Divide
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    #1 -> GroupWorkflow "0.75 : 1.00" => #8
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=Lower)) => #1
        ExternalizedMapping(Value(DisplayName=Upper)) => #2
        #0, #2 -> LessThanOrEqual(Operand=FloatProperty(Value=1)) => #3
        #0, #1 -> GreaterThan(Operand=FloatProperty(Value=0.75)) => #4
        #4, #3 -> Zip
        -> LogicalAnd => #6
        -> Condition True
            WorkflowInput Source1
            -> WorkflowOutput
        -> FloatProperty(Value=1) => #8
        #6 -> Condition False
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> FloatProperty(Value=0) => #10
        #8, #10 -> Merge => #11
        -> Accumulate => #12
        #11 -> SelectMany Trial_Number
            SubscribeSubject Trial_Number
            -> WorkflowOutput
        -> Accumulate => #14
        #12, #14 -> Zip
        -> Disable Divide
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    #1 -> GroupWorkflow "-1 : -0.75" => #9
        ExternalizedMapping(Value(DisplayName=Lower)) => #0
        ExternalizedMapping(Value(DisplayName=Upper)) => #1
        WorkflowInput Source1 => #2
        #2, #0 -> GreaterThanOrEqual(Operand=FloatProperty(Value=-1)) => #3
        #2, #1 -> LessThan(Operand=FloatProperty(Value=-0.75)) => #4
        #3, #4 -> Zip
        -> LogicalAnd => #6
        -> Condition True
            WorkflowInput Source1
            -> WorkflowOutput
        -> FloatProperty(Value=1) => #8
        #6 -> Condition False
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> FloatProperty(Value=0) => #10
        #8, #10 -> Merge => #11
        -> Accumulate => #12
        #11 -> SelectMany Trial_Number
            SubscribeSubject Trial_Number
            -> WorkflowOutput
        -> Accumulate => #14
        #12, #14 -> Zip
        -> Disable Divide
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    #0, #9 -> Merge => #10
    #2, #0 -> Merge => #11
    #3, #0 -> Merge => #12
    #4, #0 -> Merge => #13
    #5, #0 -> Merge => #14
    #6, #0 -> Merge => #15
    #7, #0 -> Merge => #16
    #10, #11, #12, #13, #14, #15, #16 -> CombineLatest => #17
    #8, #0 -> Merge => #18
    FloatProperty(Value=0) => #19
    #17, #18, #19 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1.Item1 as S1,
        Item1.Item2 as S2,
        Item1.Item3 as S3,
        Item1.Item4 as S4,
        Item1.Item5 as S5,
        Item1.Item6 as S6,
        Item1.Item7 as S7,
        Item2 as S8,

        Item3 as Stim_Relative
        )
    -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Stim_Relative, ValueSelector="S1,S2,S3,S4,S5,S6,S7,S8", BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
    -> WorkflowOutput

GroupWorkflow History_Buffer
    SubscribeSubject Trial_Side => #0
    SubscribeSubject Max_Trials_Consec
    -> PropertyMapping(Count) => #2
    #0, #2 -> Bonsai.Dsp.Buffer(Count=2, Skip=1)
    -> Bonsai.Dsp.Sum
    -> MemberSelector(Selector=Val0)
    -> Disable Skip(Count=1) => #6
    Disable SubscribeSubject Trial_End
    -> Disable Condition False => #8
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    #6, #8 -> Disable Sample
    -> MulticastSubject History_Buffer
    -> Disable PublishSubject History_Buffer
    -> WorkflowOutput

GroupWorkflow Stim_Dur_Staircase
    SubscribeSubject Stim_Dur_Staircase => #0
    -> Condition True
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany Staircase_Mechanics => #2
        SubscribeSubject Correct => #0
        -> Condition True
            WorkflowInput Source1
            -> WorkflowOutput
        -> FloatProperty(Value=1) => #2
        #0 -> Condition False
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> FloatProperty(Value=0) => #4
        #2, #4 -> Merge => #5
        SubscribeSubject Abort_Trial
        -> Condition False => #7
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #5, #7 -> Sample => #8
        -> Condition "Perf < Threshold" => #9
            SubscribeSubject Perf_Prev_50 => #0
            SubscribeSubject Stim_Dur_Staircase_Perf_Thresh
            -> PropertyMapping(Value) => #2
            #0, #2 -> LessThan(Operand=FloatProperty(Value=0.8))
            -> WorkflowOutput
        #8 -> Condition "Perf > Threshold" => #10
            SubscribeSubject Perf_Prev_50 => #0
            SubscribeSubject Stim_Dur_Staircase_Perf_Thresh
            -> PropertyMapping(Value) => #2
            #0, #2 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0.8))
            -> WorkflowOutput
        -> Condition "Stim_Dur > Min_Threshold"
            SubscribeSubject Sound_Duration => #0
            SubscribeSubject Min_Sound_Duration
            -> PropertyMapping(Value) => #2
            #0, #2 -> GreaterThan(Operand=TimeSpanProperty(Value=PT0.05S))
            -> WorkflowOutput
        -> SelectMany Reduce_Stim_Dur
            SubscribeSubject Sound_Duration => #0
            SubscribeSubject Stim_Dur_Staircase_Step
            -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds => #2
              Expression: TimeSpan.FromMilliseconds(it)
            #0, #2 -> Zip
            -> Subtract
            -> MulticastSubject Sound_Duration
            -> WorkflowOutput
        -> SelectMany Gen_0s => #13
            FloatProperty(Value=0) => #0
            ExternalizedMapping(Value)
            -> IntProperty(Value=50) => #2
            #0, #2 -> Zip
            -> Bonsai.Scripting.IronPython.PythonTransform Gen_list
              Script:
                @returns(list)
                def process(value):
                  float_0 = value[0]
                  window_size = value[1]
                  result = []
                  for _ in range(window_size):
                    result.append(float_0)
                  return result
            -> Merge
            -> Bonsai.Scripting.IronPython.PythonTransform To_float
              Script:
                from System import Single

                @returns(Single)
                def process(value):
                  return 0.0
            -> WorkflowOutput
        #10 -> Condition "Stim_Dur < Min_Threshold" => #14
            SubscribeSubject Sound_Duration => #0
            SubscribeSubject Min_Sound_Duration
            -> PropertyMapping(Value) => #2
            #0, #2 -> LessThanOrEqual(Operand=TimeSpanProperty(Value=PT0.05S))
            -> WorkflowOutput
        #9, #13, #14 -> Merge
        -> Bonsai.Dsp.Buffer(Count=50, Skip=1)
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0)
        -> MulticastSubject Perf_Prev_50
        -> WorkflowOutput
    #0 -> Condition False
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> SelectMany Do_Nothing => #4
        WorkflowInput Source1
        -> FloatProperty(Value=0)
        -> WorkflowOutput
    #2, #4 -> Merge
    -> WorkflowOutput

GroupWorkflow Visualisers => #35
    GroupWorkflow Percent_Correct => #0
        SubscribeSubject Visualiser_Window_Size
        -> PropertyMapping(Count) => #1
        SubscribeSubject Correct => #2
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1) => #4
        #2 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=0) => #6
        #4, #6 -> Merge
        -> Skip(Count=1) => #8
        #8, #1 -> Bonsai.Dsp.Buffer(Count=30, Skip=1)
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0)
        -> WorkflowOutput
    GroupWorkflow Percent_Abort_Trial => #1
        SubscribeSubject Visualiser_Window_Size
        -> PropertyMapping(Count) => #1
        SubscribeSubject Abort_Trial => #2
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1) => #4
        #2 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=0) => #6
        #4, #6 -> Merge
        -> Skip(Count=1) => #8
        #8, #1 -> Bonsai.Dsp.Buffer(Count=30, Skip=1)
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0)
        -> WorkflowOutput
    GroupWorkflow Percent_First_Lick_Right => #2
        SubscribeSubject First_Lick => #0
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=StringProperty(Value=Left))
            -> WorkflowOutput
        -> IntProperty(Value=0) => #2
        #0 -> Condition
            WorkflowInput Source1
            -> Equal(Operand=StringProperty(Value=Right))
            -> WorkflowOutput
        -> IntProperty(Value=1) => #4
        #2, #4 -> Merge
        -> Skip(Count=1) => #6
        SubscribeSubject Visualiser_Window_Size
        -> PropertyMapping(Count) => #8
        #6, #8 -> Bonsai.Dsp.Buffer(Count=30, Skip=1)
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0)
        -> WorkflowOutput
    GroupWorkflow Average_Normalised_Latency => #3
        SubscribeSubject Visualiser_Window_Size
        -> PropertyMapping(Count) => #1
        SubscribeSubject Response_Latency
        -> Skip(Count=1) => #3
        SubscribeSubject Response_Window
        -> MemberSelector(Selector=TotalSeconds)
        -> Multiply(Operand=DoubleProperty(Value=1000))
        -> PropertyMapping(Value) => #7
        SubscribeSubject Trial_End
        -> Condition True => #9
            WorkflowInput Source1
            -> WorkflowOutput
        #3, #9 -> Sample => #10
        #10, #1 -> Bonsai.Dsp.Buffer(Count=30, Skip=1)
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #13
        #13, #7 -> Divide(Operand=DoubleProperty(Value=10000))
        -> WorkflowOutput
    DoubleProperty(Value=0) => #4
    #0, #4 -> Merge => #5
    DoubleProperty(Value=0) => #6
    #1, #6 -> Merge => #7
    DoubleProperty(Value=0) => #8
    #2, #8 -> Merge => #9
    DoubleProperty(Value=0) => #10
    #3, #10 -> Merge => #11
    GroupWorkflow Air_Puff_Contingency_Switch => #12
        SubscribeSubject Air_Puff_Contingency
        -> Condition Show_Switches?
            SubscribeSubject Show_Contingency_Switches
            -> WorkflowOutput
        -> Disable Skip(Count=1)
        -> DistinctUntilChanged => #3
        -> DoubleProperty(Value=1) => #4
        #3 -> Bonsai.Shaders.Delay(DueTime=PT0.1S)
        -> DoubleProperty(Value=0) => #6
        #4, #6 -> Merge
        -> WorkflowOutput
    DoubleProperty(Value=0) => #13
    #12, #13 -> Merge => #14
    #5, #7, #9, #11, #14 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #16
      Expression:
        new(
        Item1 as Percent_Correct,
        Item2 as Percent_Abort_Trial,
        Item3 as Right_Bias,
        Item4 as Normalized_Response_Latency,
        Item5 as Air_Puff_Contingency_Switch

        )
    GroupWorkflow Psycometric_Stats
        SubscribeSubject Correct => #0
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> FloatProperty(Value=1) => #2
        #0 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> FloatProperty(Value=0) => #4
        #2, #4 -> Merge
        -> Skip(Count=1) => #6
        SubscribeSubject Abort_Trial
        -> Condition => #8
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #6, #8 -> Sample => #9
        -> Condition -1:-0.75
            SubscribeSubject Stim_Relative => #0
            ExternalizedMapping(Value(DisplayName=Lower)) => #1
            #0, #1 -> GreaterThanOrEqual(Operand=FloatProperty(Value=-1)) => #2
            ExternalizedMapping(Value(DisplayName=Upper)) => #3
            #0, #3 -> LessThan(Operand=FloatProperty(Value=-0.75)) => #4
            #2, #4 -> Zip
            -> LogicalAnd
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #11
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        FloatProperty(Value=0) => #12
        #11, #12 -> Merge => #13
        #9 -> Condition -0.75:-0.50
            SubscribeSubject Stim_Relative => #0
            ExternalizedMapping(Value(DisplayName=Lower)) => #1
            #0, #1 -> GreaterThanOrEqual(Operand=FloatProperty(Value=-0.75)) => #2
            ExternalizedMapping(Value(DisplayName=Upper)) => #3
            #0, #3 -> LessThan(Operand=FloatProperty(Value=-0.5)) => #4
            #2, #4 -> Zip
            -> LogicalAnd
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #15
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        #15, #12 -> Merge => #16
        #9 -> Condition -0.50:-0.25
            SubscribeSubject Stim_Relative => #0
            ExternalizedMapping(Value(DisplayName=Lower)) => #1
            #0, #1 -> GreaterThanOrEqual(Operand=FloatProperty(Value=-0.5)) => #2
            ExternalizedMapping(Value(DisplayName=Upper)) => #3
            #0, #3 -> LessThan(Operand=FloatProperty(Value=-0.25)) => #4
            #2, #4 -> Zip
            -> LogicalAnd
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #18
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        #18, #12 -> Merge => #19
        #9 -> Condition -0.25:0
            SubscribeSubject Stim_Relative => #0
            ExternalizedMapping(Value(DisplayName=Lower)) => #1
            #0, #1 -> GreaterThanOrEqual(Operand=FloatProperty(Value=-0.25)) => #2
            ExternalizedMapping(Value(DisplayName=Upper)) => #3
            #0, #3 -> LessThan(Operand=FloatProperty(Value=0)) => #4
            #2, #4 -> Zip
            -> LogicalAnd
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #21
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        #21, #12 -> Merge => #22
        #9 -> Condition 0:0.25
            SubscribeSubject Stim_Relative => #0
            ExternalizedMapping(Value(DisplayName=Lower)) => #1
            #0, #1 -> GreaterThan(Operand=FloatProperty(Value=0)) => #2
            ExternalizedMapping(Value(DisplayName=Upper)) => #3
            #0, #3 -> LessThanOrEqual(Operand=FloatProperty(Value=0.25)) => #4
            #2, #4 -> Zip
            -> LogicalAnd
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #24
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        #24, #12 -> Merge => #25
        #9 -> Condition 0.25:0.50
            SubscribeSubject Stim_Relative => #0
            ExternalizedMapping(Value(DisplayName=Lower)) => #1
            #0, #1 -> GreaterThan(Operand=FloatProperty(Value=0.25)) => #2
            ExternalizedMapping(Value(DisplayName=Upper)) => #3
            #0, #3 -> LessThanOrEqual(Operand=FloatProperty(Value=0.5)) => #4
            #2, #4 -> Zip
            -> LogicalAnd
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #27
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        #27, #12 -> Merge => #28
        #9 -> Condition 0.50:0.75
            SubscribeSubject Stim_Relative => #0
            ExternalizedMapping(Value(DisplayName=Lower)) => #1
            #0, #1 -> GreaterThan(Operand=FloatProperty(Value=0.5)) => #2
            ExternalizedMapping(Value(DisplayName=Upper)) => #3
            #0, #3 -> LessThanOrEqual(Operand=FloatProperty(Value=0.75)) => #4
            #2, #4 -> Zip
            -> LogicalAnd
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #30
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        #30, #12 -> Merge => #31
        #13, #16, #19, #22, #25, #28, #31 -> CombineLatest => #32
        #9 -> Condition 0.75:1
            SubscribeSubject Stim_Relative => #0
            ExternalizedMapping(Value(DisplayName=Lower)) => #1
            #0, #1 -> GreaterThan(Operand=FloatProperty(Value=0.75)) => #2
            ExternalizedMapping(Value(DisplayName=Upper)) => #3
            #0, #3 -> LessThanOrEqual(Operand=FloatProperty(Value=1)) => #4
            #2, #4 -> Zip
            -> LogicalAnd
            -> WorkflowOutput
        -> GroupWorkflow Avg_Correct => #34
            WorkflowInput Source1 => #0
            -> Accumulate => #1
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #3
            #1, #3 -> Zip
            -> Divide
            -> WorkflowOutput
        #34, #12 -> Merge => #35
        FloatProperty(Value=0) => #36
        #32, #35, #36 -> CombineLatest
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #18
      Expression:
        new(
        Item1.Item1 as S1,
        Item1.Item2 as S2,
        Item1.Item3 as S3,
        Item1.Item4 as S4,
        Item1.Item5 as S5,
        Item1.Item6 as S6,
        Item1.Item7 as S7,
        Item2 as S8,

        Item3 as Stim_Relative
        )
    #16, #18 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as General_Stats,
        Item2 as Psychometric_Stats
        )
    -> WorkflowOutput

    SubscribeSubject Correct
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> IntProperty(Value=1)
    -> Accumulate
    -> MulticastSubject Correct_Count
-> MemberSelector(Selector=General_Stats)
-> GroupWorkflow Summary_Stats
    WorkflowInput Source1
    -> Bonsai.Design.Visualizers.RollingGraphBuilder
      ValueSelector="Percent_Correct,Percent_Abort_Trial,Right_Bias,Normalized_Response_Latency,Air_Puff_Contingency_Switch"
      SymbolType=None
      LineWidth=3
      Capacity=nil
      Min=nil
      Max=nil
    -> WorkflowOutput
#35 -> MemberSelector(Selector=Psychometric_Stats)
-> GroupWorkflow Perf_Bar_Graph
    WorkflowInput Source1
    -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Stim_Relative, ValueSelector="S1,S2,S3,S4,S5,S6,S7,S8", BaseAxis=X, BarType=Cluster, Capacity=8, Min=0, Max=1)
    -> WorkflowOutput
