WorkflowBuilder(Version=2.6.2)
GroupWorkflow Render_Loop
    Bonsai.Shaders.CreateWindow
      Width=1
      Height=1
      VSync=On
      SwapSync=false
      ClearColor=Black
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Minimized
      DisplayDevice=Primary
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false

    Bonsai.Shaders.Timer(DueTime=PT0S)

GroupWorkflow CameraStreaming
    Bonsai.Osc.CreateTcpServer(Name=Emitter, Port=1234, NoDelay=false, AllowNatTraversal=false)

    SubscribeSubject Video_File_Name
    -> PropertyMapping(FileName) => #2
    Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
    -> DelaySubscription(DueTime=PT1S)
    -> Retry => #5
    #5, #2 -> Bonsai.Vision.VideoWriter
      FileName=../../Data/QP047/DMTS_THREE_AND_THREE_QP047_2022_10_19/Video_data.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=true
      FourCC=FMP4
      FrameRate=60
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    #5 -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #8
    SubscribeSubject Video_Timestamps_File_Name
    -> PropertyMapping(FileName) => #10
    #8, #10 -> Bonsai.IO.TextWriter(FileName=../../Data/QP047/DMTS_THREE_AND_THREE_QP047_2022_10_19/Video_timestamps.txt, Suffix=Timestamp, Buffered=true, Overwrite=false, Append=false)
    #5 -> Bonsai.Dsp.ConvertToArray(Depth=nil)
    -> Bonsai.Osc.SendMessage(Connection=Emitter, Address=/tcpimage)

GroupWorkflow StaticVariables
    FloatProperty(Value=1)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject WaitForResponse

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=1, Upper=3)
    -> BehaviorSubject DelayDistribution

    FloatProperty(Value=1)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject DelayPeriod

    IntProperty(Value=0)
    -> BehaviorSubject Correct

    Bonsai.Shaders.RenderFrame
    -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
    -> PublishSubject DrawQuad

    IntProperty(Value=0)
    -> PublishSubject TrialOutcome

    IntProperty(Value=0)
    -> BehaviorSubject FirstLick

    IntProperty(Value=0)
    -> BehaviorSubject SecondLick

    Bonsai.Shaders.Input.KeyDown(Key=End, Modifiers=nil)
    -> BehaviorSubject ExpEnd

    BooleanProperty(Value=false)
    -> BehaviorSubject OkToLick?

    BooleanProperty(Value=false)
    -> BehaviorSubject EarlyLick

    BooleanProperty(Value=false)
    -> BehaviorSubject TrialEnd

    FloatProperty(Value=0)
    -> BehaviorSubject Tone

    StringProperty(Value=QP04)
    -> BehaviorSubject MouseID

    FloatProperty(Value=300)
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject ToneDur

    FloatProperty(Value=300)
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject GoCueDur

    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    IntProperty(Value=0)
    -> BehaviorSubject "RewSide "

    IntProperty(Value=0)
    -> BehaviorSubject DelayedReward

    IntProperty(Value=0)
    -> BehaviorSubject Reward

    BooleanProperty(Value=false)
    -> BehaviorSubject AbortTrial

    IntProperty(Value=0)
    -> BehaviorSubject Attempts

    IntProperty(Value=0)
    -> BehaviorSubject CorrectCount

    IntProperty(Value=0)
    -> BehaviorSubject RewardCount

    DoubleProperty(Value=0)
    -> BehaviorSubject Percent_Right_Licks

    IntProperty(Value=0)
    -> BehaviorSubject Time

    IntProperty(Value=0)
    -> BehaviorSubject "Response_Latency (ms)"

    IntProperty(Value=0)
    -> BehaviorSubject CorrectSide

Bonsai.IO.CsvReader(FileName=C:\Users\MouseRoom\Desktop\HeadFixedBehavior\Params\Rig_Params.csv, SkipRows=0) => #3
-> Bonsai.Scripting.PythonTransform Room_ID
  Script:
    @returns(int)
    def process(value):
      len_output = 3
      param_spacing = 2
      param = 'Room_ID'
      start = value.find(param) + len(param) + param_spacing
      end = start + len_output
      return(int(value[start:end]))
-> PropertyMapping(Room_ID) => #5
#3 -> Bonsai.Scripting.PythonTransform Rig_ID
  Script:
    @returns(int)
    def process(value):
      len_output = 2
      param_spacing = 2
      param = 'Rig_ID'
      start = value.find(param) + len(param) + param_spacing
      end = start + len_output
      return(int(value[start:end]))
-> PropertyMapping(Rig_ID) => #7
#3 -> Bonsai.Scripting.PythonTransform Left_Valve
  Script:
    @returns(int)
    def process(value):
      len_output = 2
      param_spacing = 2
      param = 'Left_Valve_Time'
      start = value.find(param) + len(param) + param_spacing
      end = start + len_output
      return(int(value[start:end]))
-> PropertyMapping("LeftValveTime (ms)") => #9
#3 -> Bonsai.Scripting.PythonTransform Right_Valve
  Script:
    @returns(int)
    def process(value):
      len_output = 2
      param_spacing = 2
      param = 'Right_Valve_Time'
      start = value.find(param) + len(param) + param_spacing
      end = start + len_output
      return(int(value[start:end]))
-> PropertyMapping("RightValveTime (ms)") => #11
ExternalizedMapping("ITI (s)") => #12
#5, #7, #9, #11, #12 -> GroupWorkflow DynamicVariables
    ExternalizedMapping(Value(DisplayName="RightValveTime (ms)"))
    -> FloatProperty(Value=49)
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject RightValveTime

    ExternalizedMapping(Value(DisplayName="LeftValveTime (ms)"))
    -> FloatProperty(Value=48)
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject LeftValveTime

    ExternalizedMapping(Value(DisplayName="ResponseWindow (s)"))
    -> FloatProperty(Value=10)
    -> Bonsai.Scripting.ExpressionTransform TimeFromSeconds
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject ResponseWindow

    ExternalizedMapping(Value(DisplayName="ITI (s)"))
    -> FloatProperty(Value=1)
    -> Bonsai.Scripting.ExpressionTransform TimeFromSeconds
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject ITI

    ExternalizedMapping(Value(DisplayName=Anti_Bias_Window))
    -> IntProperty(Value=20)
    -> BehaviorSubject Anti_Bias_Window

    ExternalizedMapping(Value(DisplayName=Visualizer_Window_Size))
    -> IntProperty(Value=20)
    -> BehaviorSubject Visualizer_Window_Size

    ExternalizedMapping(Value(DisplayName="TimeoutDuration (s)"))
    -> FloatProperty(Value=3)
    -> Bonsai.Scripting.ExpressionTransform TimeFromSeconds
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject TimeoutDuration

    ExternalizedMapping(Value(DisplayName=Room_ID))
    -> IntProperty(Value=311)
    -> BehaviorSubject Room_ID

    ExternalizedMapping(Value(DisplayName=Rig_ID))
    -> IntProperty(Value=2)
    -> BehaviorSubject Rig_ID
#3 -> Bonsai.Scripting.PythonTransform Beh
  Script:
    @returns(str)
    def process(value):
      len_output = 4
      param_spacing = 2
      param = 'Harp_Beh_Port'
      start = value.find(param) + len(param) + param_spacing
      end = start + len_output
      return(value[start:end])
-> PropertyMapping(PortName)
-> GroupWorkflow HarpBeh
  Description:
    Workflows to connect and interact with Harp Behaviour Module

    Will initialise device and create subjects:

    BehModuleInput -- Messagebytes -- output from devicecommand node to issue outputs to harp board

    BehBytes -- bytesarray -- messagebytes output to be written to .bin file with MatrixWriter node

    BeamXbool -- bool -- readout  for hi/lo state of photogate/lickspout connected to ethernet breakout ports
  Workflow
    BooleanProperty(Value=false)
    -> Bonsai.Harp.Format(MessageType=Write, Address=32, PayloadType=U8)
    -> BehaviorSubject BehModule

    ByteProperty(Value=0)
    -> ToArray
    -> BehaviorSubject BehBytes

    SubscribeSubject BehBytes
    -> Bonsai.Dsp.MatrixWriter(Path=C:\bonsai\bonsaiprotocols\base4harp\Beh_Hit_Data.bin, Suffix=FileCount, Overwrite=false, Layout=ColumnMajor)

    SubscribeSubject BehModule
    -> Skip(Count=1) => #9
    ExternalizedMapping(PortName) => #10
    #9, #10 -> GroupWorkflow Device_Emulator
        ExternalizedMapping(Value(DisplayName=True_Harp))
        -> BooleanProperty(Value=true)
        -> Condition => #2
            WorkflowInput Source1
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=Emulate))
        -> BooleanProperty(Value=true) => #4
        -> PropertyMapping(Emulate)
        -> GroupWorkflow Poke_0_Emulator => #6
            ExternalizedMapping(Value(DisplayName=Emulate))
            -> BooleanProperty(Value=true) => #1
            ExternalizedMapping(Value(DisplayName=Filter))
            -> PropertySource<Bonsai.Windows.Input.KeyDown,System.Windows.Forms.Keys>(MemberName=Filter, Value=D0) => #3
            -> PropertyMapping(Filter) => #4
            ExternalizedMapping(SuppressRepetitions) => #5
            #4, #5 -> Bonsai.Windows.Input.KeyDown(Filter=D0, SuppressRepetitions=true)
            -> BooleanProperty(Value=false) => #7
            #3 -> PropertyMapping(Filter)
            -> Bonsai.Windows.Input.KeyUp(Filter=D0)
            -> BooleanProperty(Value=true) => #10
            #10, #7 -> Merge => #11
            #11, #1 -> SubscribeWhen
            -> WorkflowOutput
        #4 -> PropertyMapping(Emulate)
        -> GroupWorkflow Poke_1_Emulator => #8
            ExternalizedMapping(Value(DisplayName=Emulate))
            -> BooleanProperty(Value=true) => #1
            ExternalizedMapping(Value(DisplayName=Filter))
            -> PropertySource<Bonsai.Windows.Input.KeyDown,System.Windows.Forms.Keys>(MemberName=Filter, Value=D1) => #3
            -> PropertyMapping(Filter) => #4
            ExternalizedMapping(SuppressRepetitions) => #5
            #4, #5 -> Bonsai.Windows.Input.KeyDown(Filter=D1, SuppressRepetitions=true)
            -> BooleanProperty(Value=false) => #7
            #3 -> PropertyMapping(Filter)
            -> Bonsai.Windows.Input.KeyUp(Filter=D1)
            -> BooleanProperty(Value=true) => #10
            #10, #7 -> Merge => #11
            #11, #1 -> SubscribeWhen
            -> WorkflowOutput
        #4 -> PropertyMapping(Emulate)
        -> GroupWorkflow Poke_2_Emulator => #10
            ExternalizedMapping(Value(DisplayName=Emulate))
            -> BooleanProperty(Value=true) => #1
            ExternalizedMapping(Value(DisplayName=Filter))
            -> PropertySource<Bonsai.Windows.Input.KeyDown,System.Windows.Forms.Keys>(MemberName=Filter, Value=D2) => #3
            -> PropertyMapping(Filter) => #4
            ExternalizedMapping(SuppressRepetitions) => #5
            #4, #5 -> Bonsai.Windows.Input.KeyDown(Filter=D2, SuppressRepetitions=true)
            -> BooleanProperty(Value=false) => #7
            #3 -> PropertyMapping(Filter)
            -> Bonsai.Windows.Input.KeyUp(Filter=D2)
            -> BooleanProperty(Value=true) => #10
            #10, #7 -> Merge => #11
            #11, #1 -> SubscribeWhen
            -> WorkflowOutput
        WorkflowInput Source1 => #11
        ExternalizedMapping(PortName) => #12
        #11, #12 -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM4)
        -> DelaySubscription(DueTime=PT1S) => #14
        #14, #2 -> SubscribeWhen => #15
        -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port0) => #16
        #16, #6 -> Merge
        -> BehaviorSubject Beam0Bool
        #15 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port1) => #19
        #19, #8 -> Merge
        -> BehaviorSubject Beam1Bool
        #15 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port2) => #22
        #22, #10 -> Merge
        -> BehaviorSubject Beam2Bool
        #15 -> MemberSelector(Selector=MessageBytes)
        -> MulticastSubject BehBytes
#3 -> Bonsai.Scripting.PythonTransform Sound_Card
  Script:
    @returns(str)
    def process(value):
      len_output = 4
      param_spacing = 2
      param = 'Sound_Card_Port'
      start = value.find(param) + len(param) + param_spacing
      end = start + len_output
      return(value[start:end])
-> PropertyMapping(PortName)
-> GroupWorkflow HarpSoundCard
    SubscribeSubject PlaySound
    -> Skip(Count=1) => #1
    SubscribeSubject Soundcard?
    -> Condition => #3
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=true))
        -> WorkflowOutput
    SubscribeSubject SoundIndex
    -> Skip(Count=1)
    -> Timestamp
    -> MemberSelector(Selector=Timestamp) => #7
    SubscribeSubject Freq
    -> Skip(Count=1)
    -> Bonsai.Scripting.PythonTransform
      Script:
        @returns(float)
        def process(value):
          return 2**value
    -> Bonsai.Scripting.ExpressionTransform
      Expression: uint16(it)
    -> Bonsai.Harp.Format(MessageType=Write, Address=32, PayloadType=U16) => #12
    SubscribeSubject StopSound
    -> IntProperty(Value=3)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: byte(it)
    -> Bonsai.Harp.Format(MessageType=Write, Address=33, PayloadType=U8) => #16
    SubscribeSubject Volume
    -> Skip(Count=1)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: uint16(it)
    -> Sink
        WorkflowInput Source1
        -> Bonsai.Harp.Format(MessageType=Write, Address=34, PayloadType=U8)
        -> WorkflowOutput
    -> Bonsai.Harp.Format(MessageType=Write, Address=35, PayloadType=U8) => #21
    #12, #16, #21 -> Merge => #22
    #1, #22 -> Merge => #23
    ExternalizedMapping(PortName) => #24
    #23, #24 -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM3)
    -> DelaySubscription(DueTime=PT1S) => #26
    #26, #3 -> SubscribeWhen
    #23 -> Timestamp
    -> MemberSelector(Selector=Timestamp) => #29
    #29, #7 -> Zip
    -> Subtract

    IntProperty(Value=0)
    -> BehaviorSubject SoundIndex

    SubscribeSubject SoundIndex
    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U16, Payload=0)
    -> BehaviorSubject PlaySound

    ExternalizedMapping(Value(DisplayName=Soundcard?))
    -> BooleanProperty(Value=true)
    -> BehaviorSubject Soundcard?

    FloatProperty(Value=11.5)
    -> BehaviorSubject Freq

    IntProperty(Value=1000)
    -> BehaviorSubject Volume

    SubscribeSubject Freq
    -> BehaviorSubject PlayTone

    Disable Bonsai.Windows.Input.KeyDown(Filter=End, SuppressRepetitions=false)
    -> IntProperty(Value=3)
    -> BehaviorSubject StopSound

    FloatProperty(Value=11.96578)
    -> BehaviorSubject 4kHz

    FloatProperty(Value=12.96578)
    -> BehaviorSubject 8kHz

    FloatProperty(Value=13.96578)
    -> BehaviorSubject 16kHz

    FloatProperty(Value=14.96578)
    -> BehaviorSubject 32kHz

SubscribeSubject ExpEnd => #20
SubscribeSubject ITI
-> PropertyMapping(DueTime)
-> Timer(DueTime=PT3S, Period=PT0S)
-> Sink SetSpouts
    SubscribeSubject Beam1Bool
    -> Condition
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> BooleanProperty(Value=true)
    -> MulticastSubject Beam1Bool

    SubscribeSubject Beam2Bool
    -> Condition
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> BooleanProperty(Value=true)
    -> MulticastSubject Beam2Bool

    SubscribeSubject Beam0Bool
    -> Condition
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> BooleanProperty(Value=true)
    -> MulticastSubject Beam0Bool
-> Sink SetCorrectSide
    SubscribeSubject Correct
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> SelectMany SwitchCorrectSide
        SubscribeSubject CorrectSide => #0
        SubscribeSubject CorrectCount
        -> Bonsai.Scripting.ExpressionCondition
          Expression: it%3 == 0
        -> BooleanProperty(Value=true)
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1) => #5
        #5, #0 -> Zip
        -> Subtract
        -> Bonsai.Numerics.Abs
        -> MulticastSubject CorrectSide
    -> WorkflowOutput
-> SelectMany Trial
    WorkflowInput Source1
    -> Disable Sink TrialIncrement
        SubscribeSubject TrialCounter => #0
        IntProperty(Value=1) => #1
        #0, #1 -> Zip
        -> Add
        -> MulticastSubject TrialCounter
    -> SelectMany Response
        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=0) => #2
        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=1) => #5
        #2, #5 -> Merge
        -> Take(Count=1)
        -> Sink ResetSpouts
            SubscribeSubject Beam1Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BooleanProperty(Value=true)
            -> MulticastSubject Beam1Bool

            SubscribeSubject Beam2Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BooleanProperty(Value=true)
            -> MulticastSubject Beam2Bool
        -> Sink RecordFirstLick
            WorkflowInput Source1
            -> MulticastSubject FirstLick
            -> WorkflowOutput
        -> WorkflowOutput
    -> SelectMany Correct? => #3
        SubscribeSubject CorrectSide => #0
        SubscribeSubject FirstLick => #1
        #0, #1 -> Zip
        -> Equal => #3
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1)
        -> MulticastSubject Correct
        -> Sink CorrectCounter => #7
            SubscribeSubject CorrectCount => #0
            WorkflowInput Source1 => #1
            #1, #0 -> Zip
            -> Disable Take(Count=1)
            -> Add
            -> MulticastSubject CorrectCount
        #3 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=0)
        -> MulticastSubject Correct
        -> Disable Sink CorrectCounter => #11
            SubscribeSubject CorrectCounter => #0
            WorkflowInput Source1 => #1
            #1, #0 -> Zip
            -> Disable Take(Count=1)
            -> Add
            -> MulticastSubject CorrectCounter
        #7, #11 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> Condition Yes
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=1))
        -> Disable Sink CorrectCounter
            Disable SubscribeSubject Correct
            -> Disable Condition => #1
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            Disable SubscribeSubject CorrectCounter => #2
            #1, #2 -> Disable Zip
            -> Disable Take(Count=1)
            -> Disable Add
            -> Disable MulticastSubject CorrectCounter

            SubscribeSubject Correct
        -> WorkflowOutput
    -> SelectMany ReleaseReward => #5
        SubscribeSubject FirstLick => #0
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> SelectMany 4Khz
            SubscribeSubject 4kHz
            -> Sink SetLevel
                WorkflowInput Source1
                -> IntProperty(Value=90)
                -> Bonsai.Scripting.ExpressionTransform
                  Expression: (it-107.54)/-0.0764
                -> PropertyMapping(Value)
                -> IntProperty(Value=229)
                -> Sink Left
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> Sink Right
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> WorkflowOutput
            -> MulticastSubject Freq => #2
            SubscribeSubject ToneDur
            -> PropertyMapping(DueTime) => #4
            #2, #4 -> Delay(DueTime=PT0.3S)
            -> IntProperty(Value=3)
            -> MulticastSubject StopSound
            -> IntProperty(Value=4)
            -> MulticastSubject Tone
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany '"Go"Cue'
            WorkflowInput Source1 => #0
            SubscribeSubject GoCueDur
            -> PropertyMapping(DueTime) => #2
            #0, #2 -> Delay(DueTime=PT0.3S)
            -> WorkflowOutput
        -> SelectMany RewardLeft
            WorkflowInput Source1
            -> Disable SelectMany RewardTone(Description=SoundCard)
                SubscribeSubject RewardDur
                -> PropertyMapping(DueTime) => #1
                WorkflowInput Source1 => #2
                ExternalizedMapping(SoundLevel) => #3
                Source2=#2, Source2=#3 -> Sink SetLevel => #4
                    ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                    WorkflowInput Source1 => #1
                    #1, #0 -> IntProperty(Value=80)
                    -> Bonsai.Scripting.ExpressionTransform
                      Expression: (it-107.54)/-0.0764
                    -> PropertyMapping(Value)
                    -> IntProperty(Value=360)
                    -> Sink Left
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> Sink Right
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> WorkflowOutput
                SubscribeSubject RewardID
                -> PropertyMapping(Value) => #6
                #4, #6 -> IntProperty(Value=5)
                -> Take(Count=1)
                -> MulticastSubject SoundIndex
                -> Timestamp
                -> MemberSelector(Selector=Timestamp.TimeOfDay)
                -> MulticastSubject RewardToneTime => #12
                #12, #1 -> Delay(DueTime=PT0.8S)
                -> WorkflowOutput
            -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke1Valve)
            -> MulticastSubject BehModule => #3
            SubscribeSubject LeftValveTime
            -> PropertyMapping(DueTime) => #5
            #3, #5 -> Delay(DueTime=PT0.048S)
            -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve)
            -> MulticastSubject BehModule
            -> WorkflowOutput
        -> IntProperty(Value=0) => #5
        #0 -> Condition
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> SelectMany 16kHz
            SubscribeSubject 16kHz
            -> Sink SetLevel
                WorkflowInput Source1
                -> IntProperty(Value=90)
                -> Bonsai.Scripting.ExpressionTransform
                  Expression: (it-107.54)/-0.0764
                -> PropertyMapping(Value)
                -> IntProperty(Value=229)
                -> Sink Left
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> Sink Right
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> WorkflowOutput
            -> MulticastSubject Freq => #2
            SubscribeSubject ToneDur
            -> PropertyMapping(DueTime) => #4
            #2, #4 -> Delay(DueTime=PT0.3S)
            -> IntProperty(Value=3)
            -> MulticastSubject StopSound
            -> IntProperty(Value=16)
            -> MulticastSubject Tone
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany '"Go"Cue'
            WorkflowInput Source1 => #0
            SubscribeSubject GoCueDur
            -> PropertyMapping(DueTime) => #2
            #0, #2 -> Delay(DueTime=PT0.3S)
            -> WorkflowOutput
        -> SelectMany RewardRight
            WorkflowInput Source1
            -> Disable SelectMany RewardTone(Description=SoundCard)
                SubscribeSubject RewardDur
                -> PropertyMapping(DueTime) => #1
                WorkflowInput Source1 => #2
                ExternalizedMapping(SoundLevel) => #3
                Source2=#2, Source2=#3 -> Sink SetLevel => #4
                    ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                    WorkflowInput Source1 => #1
                    #1, #0 -> IntProperty(Value=80)
                    -> Bonsai.Scripting.ExpressionTransform
                      Expression: (it-107.54)/-0.0764
                    -> PropertyMapping(Value)
                    -> IntProperty(Value=360)
                    -> Sink Left
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> Sink Right
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> WorkflowOutput
                SubscribeSubject RewardID
                -> PropertyMapping(Value) => #6
                #4, #6 -> IntProperty(Value=5)
                -> Take(Count=1)
                -> MulticastSubject SoundIndex
                -> Timestamp
                -> MemberSelector(Selector=Timestamp.TimeOfDay)
                -> MulticastSubject RewardToneTime => #12
                #12, #1 -> Delay(DueTime=PT0.8S)
                -> WorkflowOutput
            -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve)
            -> MulticastSubject BehModule => #3
            SubscribeSubject RightValveTime
            -> PropertyMapping(DueTime) => #5
            #3, #5 -> Delay(DueTime=PT0.049S)
            -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve)
            -> MulticastSubject BehModule
            -> WorkflowOutput
        -> IntProperty(Value=1) => #10
        #5, #10 -> Merge
        -> MulticastSubject "RewSide "
        -> IntProperty(Value=1)
        -> MulticastSubject Reward
        -> WorkflowOutput
    #3 -> Condition No
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> SelectMany DoNothing => #7
        WorkflowInput Source1
        -> Delay(DueTime=PT0.2S)
        -> IntProperty(Value=-1)
        -> MulticastSubject "RewSide "
        -> IntProperty(Value=0)
        -> MulticastSubject Tone
        -> IntProperty(Value=0)
        -> MulticastSubject Reward
        -> WorkflowOutput
    #5, #7 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> Sink TrialIncrement
    SubscribeSubject TrialNumber => #0
    IntProperty(Value=1) => #1
    #0, #1 -> Zip
    -> Add
    -> MulticastSubject TrialNumber
-> Sink PrepNewTrial
    WorkflowInput Source1
    -> BooleanProperty(Value=true)
    -> MulticastSubject TrialEnd
    -> WorkflowOutput
-> Repeat => #29
#29, #20 -> TakeUntil
-> WorkflowOutput

ExternalizedMapping(Data_Path, Exp_Name, Animal_ID)
-> GroupWorkflow Control_Parameters
    ExternalizedMapping(Value(DisplayName=Data_Path))
    -> StringProperty(Value=../../Data) => #1
    ExternalizedMapping(Value(DisplayName=Exp_Name))
    -> StringProperty(Value=DMTS_THREE_AND_THREE) => #3
    ExternalizedMapping(Value(DisplayName=Animal_ID))
    -> StringProperty(Value=TEST)
    -> BehaviorSubject Animal_ID => #6
    IntProperty(Value=0)
    -> Timestamp => #8
    -> MemberSelector(Selector=Timestamp.DateTime.Year) => #9
    #8 -> MemberSelector(Selector=Timestamp.DateTime.Month) => #10
    #8 -> MemberSelector(Selector=Timestamp.Date.Day) => #11
    #9, #10, #11 -> Zip
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1.toString() + "_" + Item2.toString() + "_" + Item3.toString() as date
        )
    -> MemberSelector(Selector=date) => #14
    #1, #3, #6, #14 -> Zip => #15
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Trial_Summary.csv" as Trial_Summary_File_Name
        )
    -> MemberSelector(Selector=Trial_Summary_File_Name)
    -> BehaviorSubject Trial_File_Name
    #15 -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Detected_Licks.csv" as Licks_File_Name
        )
    -> MemberSelector(Selector=Licks_File_Name)
    -> BehaviorSubject Licks_File_Name
    #15 -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Video_data.avi" as Video_File_Name
        )
    -> MemberSelector(Selector=Video_File_Name)
    -> BehaviorSubject Video_File_Name
    #15 -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Video_timestamps.txt" as Video_Timestamps_File_Name
        )
    -> MemberSelector(Selector=Video_Timestamps_File_Name)
    -> BehaviorSubject Video_Timestamps_File_Name

GroupWorkflow Save_Data
    SubscribeSubject TrialEnd => #0
    SubscribeSubject "RewSide " => #1
    SubscribeSubject Tone => #2
    SubscribeSubject TrialNumber => #3
    SubscribeSubject Animal_ID => #4
    SubscribeSubject Trial_File_Name
    -> PropertyMapping(FileName) => #6
    SubscribeSubject FirstLick => #7
    SubscribeSubject Reward => #8
    SubscribeSubject CorrectCount => #9
    #4, #3, #7, #2, #8, #1, #9 -> CombineLatest => #10
    #10, #0 -> Sample
    -> Timestamp => #12
    -> MemberSelector(Selector=Value) => #13
    #12 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #14
    #13, #14 -> Zip
    -> Skip(Count=1)
    -> Bonsai.Scripting.ExpressionTransform => #17
      Expression:
        new(
        Item1.Item1 as Animal_ID,
        Item1.Item2 as TrialNumber,
        Item1.Item3 as FirstLick,
        Item1.Item4 as Tone,
        Item1.Item5 as Reward,
        Item1.Item6 as RewSide,
        Item1.Item7 as CorrectCount,
        Item2 as Time
        )
    #17, #6 -> Bonsai.IO.CsvWriter
      FileName=../../Data/QP047/DMTS_THREE_AND_THREE_QP047_2022_10_19/Trial_Summary.csv
      Delimiter=","
      Append=true
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true

    SubscribeSubject Beam1Bool => #19
    -> Timestamp => #20
    -> MemberSelector(Selector=Value) => #21
    #20 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #22
    #19 -> StringProperty(Value=Beam1Bool) => #23
    #21, #22, #23 -> Zip => #24
    SubscribeSubject Beam2Bool => #25
    -> Timestamp => #26
    -> MemberSelector(Selector=Value) => #27
    #26 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #28
    #25 -> StringProperty(Value=Beam2Bool) => #29
    #27, #28, #29 -> Zip => #30
    #24, #30 -> Merge
    -> Bonsai.Scripting.ExpressionTransform => #32
      Expression:
        new(
        Item1 as State,
        Item2 as Time,
        Item3 as Spout
        )
    SubscribeSubject Licks_File_Name
    -> PropertyMapping(FileName) => #34
    #32, #34 -> Bonsai.IO.CsvWriter
      FileName=../../Data/QP047/DMTS_THREE_AND_THREE_QP047_2022_10_19/Detected_Licks.csv
      Delimiter=","
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true

    SubscribeSubject FirstLick
    SubscribeSubject "RewSide "
    SubscribeSubject Tone
    SubscribeSubject TrialNumber
