WorkflowBuilder(Version=2.6.3)
GroupWorkflow CameraStreaming
    Bonsai.Osc.CreateTcpServer(Name=Emitter, Port=1234, NoDelay=false, AllowNatTraversal=false)

    SubscribeSubject Video_File_Name
    -> PropertyMapping(FileName) => #2
    Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
    -> DelaySubscription(DueTime=PT1S) => #4
    #4, #2 -> Bonsai.Vision.VideoWriter
      FileName=../../Data/QP017/PWM_Habituation_QP017_2022_7_19/Video_data.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=true
      FourCC=FMP4
      FrameRate=60
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    #4 -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #7
    SubscribeSubject Video_Timestamps_File_Name
    -> PropertyMapping(FileName) => #9
    #7, #9 -> Bonsai.IO.TextWriter(FileName=../../Data/QP017/PWM_Habituation_QP017_2022_7_19/Video_timestamps.txt, Suffix=Timestamp, Buffered=true, Overwrite=false, Append=false)
    #4 -> Bonsai.Dsp.ConvertToArray(Depth=nil)
    -> Bonsai.Osc.SendMessage(Connection=Emitter, Address=/tcpimage)

GroupWorkflow HarpSoundCard
    SubscribeSubject PlaySound
    -> Skip(Count=1) => #1
    SubscribeSubject Soundcard?
    -> Condition => #3
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=true))
        -> WorkflowOutput
    SubscribeSubject SoundIndex
    -> Skip(Count=1)
    -> Timestamp
    -> MemberSelector(Selector=Timestamp) => #7
    Disable SubscribeSubject Volume
    -> Disable Skip(Count=1)
    -> Disable Bonsai.Scripting.ExpressionTransform => #10
      Expression: uint16(it)
    SubscribeSubject Freq
    -> Skip(Count=1)
    -> Bonsai.Scripting.PythonTransform
      Script:
        @returns(float)
        def process(value):
          return 2**value
    -> Bonsai.Scripting.ExpressionTransform
      Expression: uint16(it)
    -> Bonsai.Harp.Format(MessageType=Write, Address=32, PayloadType=U16) => #15
    Disable SubscribeSubject PlayTone
    -> Disable Skip(Count=1)
    -> Disable IntProperty(Value=32)
    -> Disable Bonsai.Scripting.ExpressionTransform => #19
      Expression: uint16(it)
    #19, #10 -> Disable CombineLatest
    -> Disable SelectMany ToArray
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1) => #1
        #0 -> MemberSelector(Selector=Item2) => #2
        #1, #2 -> Merge
        -> ToArray
        -> WorkflowOutput
    -> Disable IntProperty(Value=1)
    -> Disable Bonsai.Harp.Format(MessageType=Write, Address=36, PayloadType=U16) => #23
    SubscribeSubject StopSound
    -> IntProperty(Value=3)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: byte(it)
    -> Bonsai.Harp.Format(MessageType=Write, Address=33, PayloadType=U8) => #27
    SubscribeSubject Volume
    -> Skip(Count=1)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: uint16(it)
    -> Sink
        WorkflowInput Source1
        -> Bonsai.Harp.Format(MessageType=Write, Address=34, PayloadType=U8)
        -> WorkflowOutput
    -> Bonsai.Harp.Format(MessageType=Write, Address=35, PayloadType=U8) => #32
    #23, #15, #27, #32 -> Merge => #33
    #1, #33 -> Merge => #34
    ExternalizedMapping(PortName) => #35
    #34, #35 -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM3) => #36
    #36, #3 -> SubscribeWhen
    #34 -> Timestamp
    -> MemberSelector(Selector=Timestamp) => #39
    #39, #7 -> Zip
    -> Subtract

    IntProperty(Value=0)
    -> BehaviorSubject SoundIndex

    SubscribeSubject SoundIndex
    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U16, Payload=0)
    -> BehaviorSubject PlaySound

    ExternalizedMapping(Value(DisplayName=Soundcard?))
    -> BooleanProperty(Value=true)
    -> BehaviorSubject Soundcard?

    FloatProperty(Value=11.5)
    -> BehaviorSubject Freq

    IntProperty(Value=1000)
    -> BehaviorSubject Volume

    SubscribeSubject Freq
    -> BehaviorSubject PlayTone

    Disable Bonsai.Windows.Input.KeyDown(Filter=End, SuppressRepetitions=false)
    -> IntProperty(Value=3)
    -> BehaviorSubject StopSound

    FloatProperty(Value=11.96578)
    -> BehaviorSubject 4kHz

    FloatProperty(Value=13.96578)
    -> BehaviorSubject 16kHz

    FloatProperty(Value=12.96578)
    -> BehaviorSubject 8kHz

GroupWorkflow HarpBeh
  Description:
    Workflows to connect and interact with Harp Behaviour Module

    Will initialise device and create subjects:

    BehModuleInput -- Messagebytes -- output from devicecommand node to issue outputs to harp board

    BehBytes -- bytesarray -- messagebytes output to be written to .bin file with MatrixWriter node

    BeamXbool -- bool -- readout  for hi/lo state of photogate/lickspout connected to ethernet breakout ports
  Workflow
    Disable BooleanProperty(Value=false)
    -> Disable BehaviorSubject Beam0Bool
    -> Disable BehaviorSubject Beam1Bool
    -> Disable BehaviorSubject Beam2Bool

    BooleanProperty(Value=false)
    -> Bonsai.Harp.Format(MessageType=Write, Address=32, PayloadType=U8)
    -> BehaviorSubject BehModule

    ByteProperty(Value=0)
    -> ToArray
    -> BehaviorSubject BehBytes

    Disable SubscribeSubject BehModule
    -> Disable Skip(Count=1)
    -> Disable Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM4) => #12
    -> Disable Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke0InfraRedBeam)
    -> Disable BehaviorSubject Beam0Bool
    #12 -> Disable Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke1InfraRedBeam)
    -> Disable BehaviorSubject Beam1Bool
    #12 -> Disable Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke2InfraRedBeam)
    -> Disable BehaviorSubject Beam2Bool
    #12 -> Disable MemberSelector(Selector=MessageBytes)
    -> Disable MulticastSubject BehBytes

    SubscribeSubject BehBytes
    -> Bonsai.Dsp.MatrixWriter(Path=C:\bonsai\bonsaiprotocols\base4harp\Beh_Hit_Data.bin, Suffix=FileCount, Overwrite=false, Layout=ColumnMajor)

    SubscribeSubject BehModule
    -> Skip(Count=1) => #24
    ExternalizedMapping(PortName) => #25
    #24, #25 -> GroupWorkflow Device_Emulator
        ExternalizedMapping(Value(DisplayName=True_Harp))
        -> BooleanProperty(Value=true)
        -> Condition => #2
            WorkflowInput Source1
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=Emulate))
        -> BooleanProperty(Value=true) => #4
        -> PropertyMapping(Emulate)
        -> GroupWorkflow Poke_0_Emulator => #6
            ExternalizedMapping(Value(DisplayName=Emulate))
            -> BooleanProperty(Value=true) => #1
            ExternalizedMapping(Value(DisplayName=Filter))
            -> PropertySource<Bonsai.Windows.Input.KeyDown,System.Windows.Forms.Keys>(MemberName=Filter, Value=D0) => #3
            -> PropertyMapping(Filter) => #4
            ExternalizedMapping(SuppressRepetitions) => #5
            #4, #5 -> Bonsai.Windows.Input.KeyDown(Filter=D0, SuppressRepetitions=true)
            -> BooleanProperty(Value=false) => #7
            #3 -> PropertyMapping(Filter)
            -> Bonsai.Windows.Input.KeyUp(Filter=D0)
            -> BooleanProperty(Value=true) => #10
            #10, #7 -> Merge => #11
            #11, #1 -> SubscribeWhen
            -> WorkflowOutput
        #4 -> PropertyMapping(Emulate)
        -> GroupWorkflow Poke_1_Emulator => #8
            ExternalizedMapping(Value(DisplayName=Emulate))
            -> BooleanProperty(Value=true) => #1
            ExternalizedMapping(Value(DisplayName=Filter))
            -> PropertySource<Bonsai.Windows.Input.KeyDown,System.Windows.Forms.Keys>(MemberName=Filter, Value=D1) => #3
            -> PropertyMapping(Filter) => #4
            ExternalizedMapping(SuppressRepetitions) => #5
            #4, #5 -> Bonsai.Windows.Input.KeyDown(Filter=D1, SuppressRepetitions=true)
            -> BooleanProperty(Value=false) => #7
            #3 -> PropertyMapping(Filter)
            -> Bonsai.Windows.Input.KeyUp(Filter=D1)
            -> BooleanProperty(Value=true) => #10
            #10, #7 -> Merge => #11
            #11, #1 -> SubscribeWhen
            -> WorkflowOutput
        #4 -> PropertyMapping(Emulate)
        -> GroupWorkflow Poke_2_Emulator => #10
            ExternalizedMapping(Value(DisplayName=Emulate))
            -> BooleanProperty(Value=true) => #1
            ExternalizedMapping(Value(DisplayName=Filter))
            -> PropertySource<Bonsai.Windows.Input.KeyDown,System.Windows.Forms.Keys>(MemberName=Filter, Value=D2) => #3
            -> PropertyMapping(Filter) => #4
            ExternalizedMapping(SuppressRepetitions) => #5
            #4, #5 -> Bonsai.Windows.Input.KeyDown(Filter=D2, SuppressRepetitions=true)
            -> BooleanProperty(Value=false) => #7
            #3 -> PropertyMapping(Filter)
            -> Bonsai.Windows.Input.KeyUp(Filter=D2)
            -> BooleanProperty(Value=true) => #10
            #10, #7 -> Merge => #11
            #11, #1 -> SubscribeWhen
            -> WorkflowOutput
        WorkflowInput Source1 => #11
        ExternalizedMapping(PortName) => #12
        #11, #12 -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM4) => #13
        #13, #2 -> SubscribeWhen => #14
        -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port0) => #15
        #15, #6 -> Merge
        -> BehaviorSubject Beam0Bool
        #14 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port1) => #18
        #18, #8 -> Merge
        -> BehaviorSubject Beam1Bool
        #14 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port2) => #21
        #21, #10 -> Merge
        -> BehaviorSubject Beam2Bool
        #14 -> MemberSelector(Selector=MessageBytes)
        -> MulticastSubject BehBytes

GroupWorkflow Render_Loop
    Bonsai.Shaders.CreateWindow
      Width=1
      Height=1
      VSync=On
      SwapSync=false
      ClearColor=Black
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Minimized
      DisplayDevice=Primary
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false

    Bonsai.Shaders.Timer(DueTime=PT0S)

ExternalizedMapping
  "RightValveTime (ms)"
  "LeftValveTime (ms)"
  "ITI (s)"
  Visualizer_Window_Size
  WN_Dur(DisplayName="WN_Dur (ms)")
  "DelayPeriod (ms)"
  LowestAmp
  "Reward_Delay (ms)"
-> GroupWorkflow DynamicVariables
    ExternalizedMapping(Value(DisplayName="RightValveTime (ms)"))
    -> FloatProperty(Value=46)
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject RightValveTime

    ExternalizedMapping(Value(DisplayName="LeftValveTime (ms)"))
    -> FloatProperty(Value=47)
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject LeftValveTime

    ExternalizedMapping(Value(DisplayName="Reward_Delay (ms)"))
    -> FloatProperty(Value=1000) => #9
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject Reward_Delay_Time
    #9 -> IntProperty(Value=0)
    -> BehaviorSubject Reward_Delay_Int

    ExternalizedMapping(Value(DisplayName="ITI (s)"))
    -> FloatProperty(Value=10)
    -> Bonsai.Scripting.ExpressionTransform TimeFromSeconds
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject ITI

    ExternalizedMapping(Value(DisplayName=Visualizer_Window_Size))
    -> IntProperty(Value=20)
    -> BehaviorSubject Visualizer_Window_Size

    ExternalizedMapping(Value(DisplayName=WN_Dur))
    -> FloatProperty(Value=400)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject WNDur

    ExternalizedMapping(Value(DisplayName="DelayPeriod (ms)"))
    -> FloatProperty(Value=700)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject DelayPeriod

    ExternalizedMapping(Value(DisplayName=LowestAmp))
    -> IntProperty(Value=60)
    -> BehaviorSubject LowestAmp

GroupWorkflow StaticVariables
    FloatProperty(Value=1)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject WaitForResponse

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=1, Upper=3)
    -> BehaviorSubject DelayDistribution

    BooleanProperty(Value=false)
    -> BehaviorSubject Correct

    Bonsai.Shaders.RenderFrame
    -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
    -> PublishSubject DrawQuad

    IntProperty(Value=0)
    -> PublishSubject Tria_lOutcome

    IntProperty(Value=0)
    -> BehaviorSubject FirstLick

    IntProperty(Value=0)
    -> BehaviorSubject SecondLick

    Bonsai.Shaders.Input.KeyDown(Key=End, Modifiers=nil)
    -> BehaviorSubject ExpEnd

    BooleanProperty(Value=false)
    -> BehaviorSubject OkToLick?

    BooleanProperty(Value=false)
    -> BehaviorSubject TrialEnd

    IntProperty(Value=0)
    -> BehaviorSubject Tone

    StringProperty(Value=QP04)
    -> BehaviorSubject MouseID

    FloatProperty(Value=300)
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject ToneDur

    FloatProperty(Value=300)
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject GoCueDur

    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    IntProperty(Value=0)
    -> BehaviorSubject "RewSide "

    IntProperty(Value=0)
    -> BehaviorSubject DelayedReward

    IntProperty(Value=0)
    -> BehaviorSubject Reward

    BooleanProperty(Value=false)
    -> BehaviorSubject AbortTrial

    IntProperty(Value=0)
    -> BehaviorSubject Attempts

    IntProperty(Value=0)
    -> BehaviorSubject CorrectCount

    IntProperty(Value=0)
    -> BehaviorSubject RewardCount

    DoubleProperty(Value=0)
    -> BehaviorSubject Percent_Right_Licks

    IntProperty(Value=80)
    -> BehaviorSubject Sa

    IntProperty(Value=80)
    -> BehaviorSubject Sb

    IntProperty(Value=3)
    -> BehaviorSubject StimID

    IntProperty(Value=7)
    -> BehaviorSubject ViolID

    IntProperty(Value=6)
    -> BehaviorSubject GoCueID

    IntProperty(Value=0)
    -> BehaviorSubject SubsequentLick

    TimeSpanProperty(Value=PT0.1S)
    -> ReplaySubject ViolDur(BufferSize=nil)

    TimeSpanProperty(Value=PT0.8S)
    -> ReplaySubject RewardDur(BufferSize=nil)

    GroupWorkflow Timestamp
        IntProperty(Value=0)
        -> Timestamp
        -> MemberSelector(Selector=Timestamp)
        -> MemberSelector(Selector=TimeOfDay)
        -> WorkflowOutput
    -> BehaviorSubject RewardToneTime

    IntProperty(Value=5)
    -> BehaviorSubject RewardID

    IntProperty(Value=80)
    -> BehaviorSubject Amp1

    IntProperty(Value=80)
    -> BehaviorSubject Amp2

    IntProperty(Value=90)
    -> BehaviorSubject ToneAmp

    IntProperty(Value=0)
    -> BehaviorSubject Time

    IntProperty(Value=0)
    -> BehaviorSubject "Response_Latency (ms)"

    IntProperty(Value=0)
    -> BehaviorSubject Rewarded_Side

    BooleanProperty(Value=false)
    -> BehaviorSubject Early_Lick

    IntProperty(Value=0)
    -> BehaviorSubject Correct_Early_Lick_Count

    BooleanProperty(Value=false)
    -> BehaviorSubject Correct_Early_Lick

    IntProperty(Value=0)
    -> BehaviorSubject Trial_Outcome

    IntProperty(Value=0)
    -> BehaviorSubject Early_Lick_Counter

SubscribeSubject ExpEnd => #7
SubscribeSubject ITI
-> PropertyMapping(DueTime)
-> Timer(DueTime=PT5S, Period=PT0S)
-> Sink PrepTrial
    WorkflowInput Source1
    -> Sink SetSpouts
        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject Beam1Bool

        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject Beam2Bool

        Disable SubscribeSubject Beam0Bool
        -> Disable Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> Disable BooleanProperty(Value=true)
        -> Disable MulticastSubject Beam0Bool
    -> Sink Reset_Variables
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> MulticastSubject Attempts
        -> BooleanProperty(Value=false)
        -> MulticastSubject TrialEnd
        -> BooleanProperty(Value=false)
        -> MulticastSubject Early_Lick
        -> WorkflowOutput
    -> Sink CheckValvesClosed
        WorkflowInput Source1 => #0
        -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve)
        -> MulticastSubject BehModule => #2
        #0 -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve)
        -> MulticastSubject BehModule => #4
        #2, #4 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> WorkflowOutput
-> SelectMany Trial
    WorkflowInput Source1
    -> Sink GenAmps
        WorkflowInput Source1
        -> SelectMany GenAmp1
            ExternalizedMapping(Value(DisplayName=Spacing)) => #0
            SubscribeSubject LowestAmp
            -> PropertyMapping(Value)
            -> IntProperty(Value=60) => #3
            Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
            -> Bonsai.Numerics.Distributions.Sample => #5
            -> Condition c_0
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=upper_bound)) => #1
                #0, #1 -> LessThan(Operand=DoubleProperty(Value=0.125))
                -> WorkflowOutput
            -> IntProperty(Value=0) => #7
            #5 -> Condition c_1
                WorkflowInput Source1 => #0
                BooleanProperty(Value=true) => #1
                ExternalizedMapping(Value(DisplayName=lower_bound)) => #2
                #0, #2 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0.125)) => #3
                ExternalizedMapping(Value(DisplayName=upper_bound)) => #4
                #0, #4 -> LessThan(Operand=DoubleProperty(Value=0.375)) => #5
                #1, #3, #5 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            -> IntProperty(Value=1) => #9
            #5 -> Condition c_4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=lower_bound)) => #1
                #0, #1 -> GreaterThan(Operand=DoubleProperty(Value=0.875))
                -> WorkflowOutput
            -> IntProperty(Value=4) => #11
            #5 -> Condition c_2
                WorkflowInput Source1 => #0
                BooleanProperty(Value=true) => #1
                ExternalizedMapping(Value(DisplayName=lower_bound)) => #2
                #0, #2 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0.375)) => #3
                ExternalizedMapping(Value(DisplayName=upper_bound)) => #4
                #0, #4 -> LessThan(Operand=DoubleProperty(Value=0.625)) => #5
                #1, #3, #5 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            -> IntProperty(Value=2) => #13
            #5 -> Condition c_3
                WorkflowInput Source1 => #0
                BooleanProperty(Value=true) => #1
                ExternalizedMapping(Value(DisplayName=lower_bound)) => #2
                #0, #2 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0.625)) => #3
                ExternalizedMapping(Value(DisplayName=upper_bound)) => #4
                #0, #4 -> LessThan(Operand=DoubleProperty(Value=0.875)) => #5
                #1, #3, #5 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            -> IntProperty(Value=3) => #15
            #7, #9, #13, #15, #11 -> Merge
            -> Take(Count=1) => #17
            #17, #0 -> Multiply(Operand=IntProperty(Value=8)) => #18
            #18, #3 -> Zip
            -> Add
            -> WorkflowOutput
        -> MulticastSubject Amp1
        -> SelectMany GenAmp2
            WorkflowInput Source1
            -> Take(Count=1) => #1
            SubscribeSubject LowestAmp => #2
            -> PropertyMapping(lower) => #3
            #2 -> Add(Operand=IntProperty(Value=32))
            -> PropertyMapping(upper) => #5
            #1, #3, #5 -> Condition Middles
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=lower)) => #1
                #0, #1 -> GreaterThan(Operand=IntProperty(Value=60)) => #2
                ExternalizedMapping(Value(DisplayName=upper)) => #3
                #0, #3 -> LessThan(Operand=IntProperty(Value=92)) => #4
                #0 -> BooleanProperty(Value=true) => #5
                #2, #4, #5 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            -> SelectMany +/- => #7
                WorkflowInput Source1 => #0
                Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample => #2
                -> Condition 0
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> LessThanOrEqual(Operand=DoubleProperty(Value=0.5))
                    -> WorkflowOutput
                -> IntProperty(Value=8) => #4
                #2 -> Condition 1
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> GreaterThan(Operand=DoubleProperty(Value=0.5))
                    -> WorkflowOutput
                -> IntProperty(Value=-8) => #6
                #4, #6 -> Merge => #7
                #0, #7 -> Zip
                -> Add
                -> WorkflowOutput
            #1, #3 -> Condition lower
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=lower)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=60))
                -> WorkflowOutput
            -> Add(Operand=IntProperty(Value=8)) => #9
            #1, #5 -> Condition upper
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=upper)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=92))
                -> WorkflowOutput
            -> Add(Operand=IntProperty(Value=-8)) => #11
            #9, #7, #11 -> Merge
            -> WorkflowOutput
        -> MulticastSubject Amp2
        -> WorkflowOutput
    -> Disable SelectMany AntiBias
        Disable SubscribeSubject TrialNumber => #0
        -> Disable Condition "Trial_Number > AntiBias_Window"
            WorkflowInput Source1 => #0
            SubscribeSubject Anti_Bias_Window
            -> PropertyMapping(Value) => #2
            #0, #2 -> GreaterThan(Operand=IntProperty(Value=3))
            -> Take(Count=1)
            -> WorkflowOutput
        -> Disable SelectMany Start_AntiBias => #2
            SubscribeSubject %_Right_Licks
            -> Take(Count=1) => #1
            -> Condition Below_30%
                WorkflowInput Source1
                -> LessThan(Operand=FloatProperty(Value=0.3))
                -> WorkflowOutput
            -> SelectMany "Sa > Sb" => #3
                SubscribeSubject Amp1 => #0
                -> Condition "Amp1 > Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThan(Operand=IntProperty(Value=80))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp1" => #2
                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Condition "Amp1 < Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=80))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp2" => #4
                    SubscribeSubject Amp2
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp1
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #1 -> Condition Above_30%
                WorkflowInput Source1
                -> GreaterThan(Operand=FloatProperty(Value=0.7))
                -> WorkflowOutput
            -> SelectMany "Sa < Sb" => #5
                SubscribeSubject Amp1 => #0
                -> Condition "Amp1 > Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThan(Operand=IntProperty(Value=84))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp2" => #2
                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Condition "Amp1 < Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=84))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp1" => #4
                    SubscribeSubject Amp2
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp1
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #1 -> Condition Random
                WorkflowInput Source1 => #0
                -> LessThanOrEqual(Operand=FloatProperty(Value=0.7)) => #1
                #0 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.3)) => #2
                #1, #2 -> Zip
                -> LogicalAnd
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany "Sa = Amp1 & Sb = Amp2"
                Disable Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
                -> Disable Bonsai.Numerics.Distributions.Sample
                -> Disable Take(Count=1) => #2
                -> Disable Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=0))
                    -> WorkflowOutput
                -> Disable SelectMany "Sa > Sb" => #4
                    Disable SubscribeSubject Amp1 => #0
                    -> Disable Condition "Amp1 > Amp2"
                        WorkflowInput Source1 => #0
                        SubscribeSubject Amp2
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> GreaterThan(Operand=IntProperty(Value=56))
                        -> WorkflowOutput
                    -> Disable SelectMany "Sa = Amp1" => #2
                        SubscribeSubject Amp1
                        -> MulticastSubject Sa => #1
                        SubscribeSubject Amp2
                        -> MulticastSubject Sb => #3
                        #1, #3 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Disable Condition "Amp1 < Amp2"
                        WorkflowInput Source1 => #0
                        SubscribeSubject Amp2
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> LessThan(Operand=IntProperty(Value=56))
                        -> WorkflowOutput
                    -> Disable SelectMany "Sa = Amp2" => #4
                        SubscribeSubject Amp2
                        -> MulticastSubject Sa => #1
                        SubscribeSubject Amp1
                        -> MulticastSubject Sb => #3
                        #1, #3 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #2, #4 -> Disable Merge
                    -> Disable Take(Count=1)
                    -> Disable WorkflowOutput

                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #9
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #11
                    #9, #11 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2 -> Disable Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> Disable SelectMany "Sa < Sb" => #6
                    SubscribeSubject Amp1 => #0
                    -> Condition "Amp1 > Amp2"
                        WorkflowInput Source1 => #0
                        SubscribeSubject Amp2
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> GreaterThan(Operand=IntProperty(Value=64))
                        -> WorkflowOutput
                    -> SelectMany "Sa = Amp2" => #2
                        SubscribeSubject Amp1
                        -> MulticastSubject Sa => #1
                        SubscribeSubject Amp2
                        -> MulticastSubject Sb => #3
                        #1, #3 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Condition "Amp1 < Amp2"
                        WorkflowInput Source1 => #0
                        SubscribeSubject Amp2
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> LessThan(Operand=IntProperty(Value=64))
                        -> WorkflowOutput
                    -> SelectMany "Sa = Amp1" => #4
                        SubscribeSubject Amp2
                        -> MulticastSubject Sa => #1
                        SubscribeSubject Amp1
                        -> MulticastSubject Sb => #3
                        #1, #3 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #2, #4 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #4, #6 -> Disable Merge
                -> Disable Take(Count=1)
                -> Disable WorkflowOutput

                SubscribeSubject Amp1
                -> MulticastSubject Sa => #11
                SubscribeSubject Amp2
                -> MulticastSubject Sb => #13
                #11, #13 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            -> Disable SelectMany Create_Discrete_Uniform
                Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample
                -> Take(Count=1)
                -> WorkflowOutput
            -> Disable Take(Count=1) => #9
            -> Disable Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> Disable SelectMany "Sa > Sb" => #11
                SubscribeSubject Amp1 => #0
                -> Condition "Amp1 > Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThan(Operand=IntProperty(Value=64))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp1" => #2
                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Condition "Amp1 < Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=64))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp2" => #4
                    SubscribeSubject Amp2
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp1
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #9 -> Disable Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Disable SelectMany "Sa < Sb" => #13
                SubscribeSubject Amp1 => #0
                -> Condition "Amp1 > Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThan(Operand=IntProperty(Value=64))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp2" => #2
                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Condition "Amp1 < Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=64))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp1" => #4
                    SubscribeSubject Amp2
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp1
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #3, #5, #11, #13 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Disable Condition "Trial_Number =< AntiBias_Window"
            WorkflowInput Source1 => #0
            SubscribeSubject Anti_Bias_Window
            -> PropertyMapping(Value) => #2
            #0, #2 -> LessThanOrEqual(Operand=IntProperty(Value=3))
            -> Take(Count=1)
            -> WorkflowOutput
        -> Disable SelectMany "Sa = Amp1 & Sb = Amp2" => #4
            Disable Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
            -> Disable Bonsai.Numerics.Distributions.Sample
            -> Disable Take(Count=1) => #2
            -> Disable Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> Disable SelectMany "Sa > Sb" => #4
                Disable SubscribeSubject Amp1 => #0
                -> Disable Condition "Amp1 > Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThan(Operand=IntProperty(Value=56))
                    -> WorkflowOutput
                -> Disable SelectMany "Sa = Amp1" => #2
                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Disable Condition "Amp1 < Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=56))
                    -> WorkflowOutput
                -> Disable SelectMany "Sa = Amp2" => #4
                    SubscribeSubject Amp2
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp1
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Disable Merge
                -> Disable Take(Count=1)
                -> Disable WorkflowOutput

                SubscribeSubject Amp1
                -> MulticastSubject Sa => #9
                SubscribeSubject Amp2
                -> MulticastSubject Sb => #11
                #9, #11 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #2 -> Disable Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Disable SelectMany "Sa < Sb" => #6
                SubscribeSubject Amp1 => #0
                -> Condition "Amp1 > Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThan(Operand=IntProperty(Value=64))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp2" => #2
                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Condition "Amp1 < Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=64))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp1" => #4
                    SubscribeSubject Amp2
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp1
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #4, #6 -> Disable Merge
            -> Disable Take(Count=1)
            -> Disable WorkflowOutput

            SubscribeSubject Amp1
            -> MulticastSubject Sa => #11
            SubscribeSubject Amp2
            -> MulticastSubject Sb => #13
            #11, #13 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #2, #4 -> Disable Merge
        -> Disable Take(Count=1)
        -> Disable WorkflowOutput

        WorkflowInput Source1
        -> SelectMany Start_AntiBias
            SubscribeSubject %_Right_Licks
            -> Take(Count=1) => #1
            -> Condition Below_30%
                WorkflowInput Source1
                -> LessThan(Operand=FloatProperty(Value=0.3))
                -> WorkflowOutput
            -> SelectMany "Sa > Sb" => #3
                SubscribeSubject Amp1 => #0
                -> Condition "Amp1 > Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThan(Operand=IntProperty(Value=76))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp1" => #2
                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Condition "Amp1 < Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=76))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp2" => #4
                    SubscribeSubject Amp2
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp1
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #1 -> Condition Above_30%
                WorkflowInput Source1
                -> GreaterThan(Operand=FloatProperty(Value=0.7))
                -> WorkflowOutput
            -> SelectMany "Sa < Sb" => #5
                SubscribeSubject Amp1 => #0
                -> Condition "Amp1 > Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThan(Operand=IntProperty(Value=84))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp2" => #2
                    SubscribeSubject Amp2
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp1
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Condition "Amp1 < Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=84))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp1" => #4
                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #1 -> Condition Random
                WorkflowInput Source1 => #0
                -> LessThanOrEqual(Operand=FloatProperty(Value=0.7)) => #1
                #0 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.3)) => #2
                #1, #2 -> Zip
                -> LogicalAnd
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany "Sa = Amp1 & Sb = Amp2"
                Disable Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
                -> Disable Bonsai.Numerics.Distributions.Sample
                -> Disable Take(Count=1) => #2
                -> Disable Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=0))
                    -> WorkflowOutput
                -> Disable SelectMany "Sa > Sb" => #4
                    Disable SubscribeSubject Amp1 => #0
                    -> Disable Condition "Amp1 > Amp2"
                        WorkflowInput Source1 => #0
                        SubscribeSubject Amp2
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> GreaterThan(Operand=IntProperty(Value=56))
                        -> WorkflowOutput
                    -> Disable SelectMany "Sa = Amp1" => #2
                        SubscribeSubject Amp1
                        -> MulticastSubject Sa => #1
                        SubscribeSubject Amp2
                        -> MulticastSubject Sb => #3
                        #1, #3 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Disable Condition "Amp1 < Amp2"
                        WorkflowInput Source1 => #0
                        SubscribeSubject Amp2
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> LessThan(Operand=IntProperty(Value=56))
                        -> WorkflowOutput
                    -> Disable SelectMany "Sa = Amp2" => #4
                        SubscribeSubject Amp2
                        -> MulticastSubject Sa => #1
                        SubscribeSubject Amp1
                        -> MulticastSubject Sb => #3
                        #1, #3 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #2, #4 -> Disable Merge
                    -> Disable Take(Count=1)
                    -> Disable WorkflowOutput

                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #9
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #11
                    #9, #11 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2 -> Disable Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> Disable SelectMany "Sa < Sb" => #6
                    SubscribeSubject Amp1 => #0
                    -> Condition "Amp1 > Amp2"
                        WorkflowInput Source1 => #0
                        SubscribeSubject Amp2
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> GreaterThan(Operand=IntProperty(Value=64))
                        -> WorkflowOutput
                    -> SelectMany "Sa = Amp2" => #2
                        SubscribeSubject Amp1
                        -> MulticastSubject Sa => #1
                        SubscribeSubject Amp2
                        -> MulticastSubject Sb => #3
                        #1, #3 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Condition "Amp1 < Amp2"
                        WorkflowInput Source1 => #0
                        SubscribeSubject Amp2
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> LessThan(Operand=IntProperty(Value=64))
                        -> WorkflowOutput
                    -> SelectMany "Sa = Amp1" => #4
                        SubscribeSubject Amp2
                        -> MulticastSubject Sa => #1
                        SubscribeSubject Amp1
                        -> MulticastSubject Sb => #3
                        #1, #3 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #2, #4 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #4, #6 -> Disable Merge
                -> Disable Take(Count=1)
                -> Disable WorkflowOutput

                SubscribeSubject Amp1
                -> MulticastSubject Sa => #11
                SubscribeSubject Amp2
                -> MulticastSubject Sb => #13
                #11, #13 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            -> Disable SelectMany Create_Discrete_Uniform
                Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample
                -> Take(Count=1)
                -> WorkflowOutput
            -> Disable Take(Count=1) => #9
            -> Disable Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> Disable SelectMany "Sa > Sb" => #11
                SubscribeSubject Amp1 => #0
                -> Condition "Amp1 > Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThan(Operand=IntProperty(Value=64))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp1" => #2
                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Condition "Amp1 < Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=64))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp2" => #4
                    SubscribeSubject Amp2
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp1
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #9 -> Disable Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Disable SelectMany "Sa < Sb" => #13
                SubscribeSubject Amp1 => #0
                -> Condition "Amp1 > Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThan(Operand=IntProperty(Value=64))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp2" => #2
                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Condition "Amp1 < Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=64))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp1" => #4
                    SubscribeSubject Amp2
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp1
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #3, #5, #11, #13 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Assign_Amplitudes
        SubscribeSubject Amp1
        -> MulticastSubject Sa => #1
        SubscribeSubject Amp2
        -> MulticastSubject Sb => #3
        #1, #3 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Sa
        WorkflowInput Source1 => #0
        SubscribeSubject Sa
        -> PropertyMapping(SoundLevel) => #2
        #0, #2 -> Sink SetLevel => #3
            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
            WorkflowInput Source1 => #1
            #1, #0 -> IntProperty(Value=76)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: (it-107.54)/-0.0764
            -> PropertyMapping(Value)
            -> IntProperty(Value=412)
            -> Sink Left
                WorkflowInput Source1
                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                -> MulticastSubject PlaySound
                -> WorkflowOutput
            -> Sink Right
                WorkflowInput Source1
                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                -> MulticastSubject PlaySound
                -> WorkflowOutput
            -> WorkflowOutput
        SubscribeSubject StimID
        -> PropertyMapping(Value) => #5
        #3, #5 -> IntProperty(Value=3)
        -> MulticastSubject SoundIndex => #7
        SubscribeSubject WNDur
        -> PropertyMapping(DueTime) => #9
        #7, #9 -> Delay(DueTime=PT0.4S)
        -> IntProperty(Value=30)
        -> MulticastSubject SoundIndex
        -> WorkflowOutput

        Disable SubscribeSubject Beam1Bool
        -> Disable Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> Disable BooleanProperty(Value=true) => #16
        Disable SubscribeSubject Beam2Bool
        -> Disable Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> Disable BooleanProperty(Value=true) => #19
        #16, #19 -> Disable Merge
        -> Disable Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Disable Take(Count=1)
        -> Disable BooleanProperty(Value=true)
        -> Disable MulticastSubject EarlyLick
    -> SelectMany DelayPeriod
        WorkflowInput Source1 => #0
        SubscribeSubject DelayPeriod
        -> PropertyMapping(DueTime) => #2
        #0, #2 -> Delay(DueTime=PT0.7S)
        -> Take(Count=1)
        -> WorkflowOutput

        Disable SubscribeSubject Beam1Bool
        -> Disable Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> Disable BooleanProperty(Value=true) => #8
        Disable SubscribeSubject Beam2Bool
        -> Disable Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> Disable BooleanProperty(Value=true) => #11
        #8, #11 -> Disable Merge
        -> Disable Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Disable Take(Count=1)
        -> Disable BooleanProperty(Value=true)
        -> Disable MulticastSubject EarlyLick
    -> SelectMany Sb
        WorkflowInput Source1 => #0
        SubscribeSubject Sb
        -> PropertyMapping(SoundLevel) => #2
        #0, #2 -> Sink SetLevel => #3
            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
            WorkflowInput Source1 => #1
            #1, #0 -> IntProperty(Value=68)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: (it-107.54)/-0.0764
            -> PropertyMapping(Value)
            -> IntProperty(Value=517)
            -> Sink Left
                WorkflowInput Source1
                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                -> MulticastSubject PlaySound
                -> WorkflowOutput
            -> Sink Right
                WorkflowInput Source1
                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                -> MulticastSubject PlaySound
                -> WorkflowOutput
            -> WorkflowOutput
        SubscribeSubject StimID
        -> PropertyMapping(Value) => #5
        #3, #5 -> IntProperty(Value=3)
        -> MulticastSubject SoundIndex => #7
        SubscribeSubject WNDur
        -> PropertyMapping(DueTime) => #9
        #7, #9 -> Delay(DueTime=PT0.4S)
        -> IntProperty(Value=30)
        -> MulticastSubject SoundIndex
        -> Delay(DueTime=PT0.5S)
        -> WorkflowOutput

        Disable SubscribeSubject Beam1Bool
        -> Disable Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> Disable BooleanProperty(Value=true) => #17
        Disable SubscribeSubject Beam2Bool
        -> Disable Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> Disable BooleanProperty(Value=true) => #20
        #17, #20 -> Disable Merge
        -> Disable Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Disable Take(Count=1)
        -> Disable BooleanProperty(Value=true)
        -> Disable MulticastSubject EarlyLick
    -> SelectMany Go_Cue => #7
        WorkflowInput Source1
        -> SelectMany 4Khz
            SubscribeSubject ToneDur
            -> PropertyMapping(DueTime) => #1
            SubscribeSubject 4kHz
            -> Sink SetLevel
                WorkflowInput Source1 => #0
                SubscribeSubject ToneAmp
                -> PropertyMapping(Value) => #2
                #0, #2 -> IntProperty(Value=90)
                -> Bonsai.Scripting.ExpressionTransform
                  Expression: (it-107.54)/-0.0764
                -> PropertyMapping(Value)
                -> IntProperty(Value=229)
                -> Sink Left
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> Sink Right
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> WorkflowOutput
            -> MulticastSubject Freq => #4
            #4, #1 -> Delay(DueTime=PT0.3S)
            -> IntProperty(Value=3)
            -> MulticastSubject StopSound
            -> IntProperty(Value=8)
            -> MulticastSubject Tone
            -> Take(Count=1)
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Response => #8
        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=1) => #2
        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=2) => #5
        #2, #5 -> Merge
        -> Disable Take(Count=1)
        -> Sink ResetSpouts
            SubscribeSubject Beam1Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BooleanProperty(Value=true)
            -> MulticastSubject Beam1Bool

            SubscribeSubject Beam2Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BooleanProperty(Value=true)
            -> MulticastSubject Beam2Bool
        -> Sink RecordFirstLick
            WorkflowInput Source1
            -> MulticastSubject FirstLick
            -> WorkflowOutput
        -> Disable Take(Count=1) => #10
        SubscribeSubject Correct_Early_Lick_Count => #11
        SubscribeSubject Sa => #12
        SubscribeSubject Sb => #13
        #13, #12 -> Zip
        -> GreaterThan => #15
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1) => #17
        #15 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=2) => #19
        #17, #19 -> Merge
        -> Disable Take(Count=1) => #21
        #21, #10 -> Zip
        -> Equal
        -> MulticastSubject Correct_Early_Lick => #24
        -> Take(Count=1) => #25
        #24 -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1) => #27
        #27, #11 -> Zip
        -> Take(Count=1)
        -> Add => #30
        #24 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=0) => #32
        #32, #11 -> Zip
        -> Take(Count=1)
        -> Add => #35
        #30, #35 -> Merge
        -> MulticastSubject Correct_Early_Lick_Count => #37
        #25, #37 -> Zip
        -> MemberSelector(Selector=Item1) => #39
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1) => #41
        #39 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=0) => #43
        #41, #43 -> Merge
        -> Sink Early_Lick_True
            WorkflowInput Source1
            -> BooleanProperty(Value=true)
            -> MulticastSubject Early_Lick
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput

        Disable Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.001S)
        -> Disable MulticastSubject Reward_Delay_Int => #49
        Disable SubscribeSubject TrialEnd
        -> Disable Condition => #51
            WorkflowInput Source1
            -> WorkflowOutput
        #49, #51 -> Disable TakeUntil
    SubscribeSubject Reward_Delay_Time
    -> PropertyMapping(DueTime) => #10
    #7, #10 -> Delay(DueTime=PT1S)
    -> Condition Check_For_Response
        SubscribeSubject Early_Lick
        -> BitwiseNot
        -> WorkflowOutput
    -> BooleanProperty(Value=false)
    -> MulticastSubject Early_Lick
    -> IntProperty(Value=-1)
    -> MulticastSubject Trial_Outcome => #16
    #8, #16 -> Merge
    -> SelectMany FeedBack
        WorkflowInput Source1 => #0
        -> Condition Correct_Early_Lick
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> SelectMany Triggered_Release => #2
            SubscribeSubject Sa => #0
            SubscribeSubject Sb => #1
            #0, #1 -> Zip
            -> LessThan => #3
            -> Condition "Sa < Sb"
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany RewardLeft
                WorkflowInput Source1
                -> Disable SelectMany RewardTone(Description=SoundCard)
                    SubscribeSubject RewardDur
                    -> PropertyMapping(DueTime) => #1
                    WorkflowInput Source1 => #2
                    ExternalizedMapping(SoundLevel) => #3
                    Source2=#2, Source2=#3 -> Sink SetLevel => #4
                        ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                        WorkflowInput Source1 => #1
                        #1, #0 -> IntProperty(Value=80)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=360)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    SubscribeSubject RewardID
                    -> PropertyMapping(Value) => #6
                    #4, #6 -> IntProperty(Value=5)
                    -> Take(Count=1)
                    -> MulticastSubject SoundIndex
                    -> Timestamp
                    -> MemberSelector(Selector=Timestamp.TimeOfDay)
                    -> MulticastSubject RewardToneTime => #12
                    #12, #1 -> Delay(DueTime=PT0.8S)
                    -> WorkflowOutput
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke1Valve)
                -> MulticastSubject BehModule => #3
                SubscribeSubject LeftValveTime
                -> PropertyMapping(DueTime) => #5
                #3, #5 -> Delay(DueTime=PT0.047S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve)
                -> MulticastSubject BehModule
                -> WorkflowOutput
            -> IntProperty(Value=1) => #6
            #3 -> Condition "Sa > Sb"
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> SelectMany RewardRight
                WorkflowInput Source1
                -> Disable SelectMany RewardTone(Description=SoundCard)
                    SubscribeSubject RewardDur
                    -> PropertyMapping(DueTime) => #1
                    WorkflowInput Source1 => #2
                    ExternalizedMapping(SoundLevel) => #3
                    Source2=#2, Source2=#3 -> Sink SetLevel => #4
                        ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                        WorkflowInput Source1 => #1
                        #1, #0 -> IntProperty(Value=80)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=360)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    SubscribeSubject RewardID
                    -> PropertyMapping(Value) => #6
                    #4, #6 -> IntProperty(Value=5)
                    -> Take(Count=1)
                    -> MulticastSubject SoundIndex
                    -> Timestamp
                    -> MemberSelector(Selector=Timestamp.TimeOfDay)
                    -> MulticastSubject RewardToneTime => #12
                    #12, #1 -> Delay(DueTime=PT0.8S)
                    -> WorkflowOutput
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve)
                -> MulticastSubject BehModule => #3
                SubscribeSubject RightValveTime
                -> PropertyMapping(DueTime) => #5
                #3, #5 -> Delay(DueTime=PT0.046S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve)
                -> MulticastSubject BehModule
                -> WorkflowOutput
            -> IntProperty(Value=2) => #9
            #6, #9 -> Merge
            -> MulticastSubject Rewarded_Side
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Condition Incorrect_Early_Lick => #3
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject Reward_Delay_Time
        -> PropertyMapping(DueTime) => #5
        #3, #5 -> Delay(DueTime=PT1S)
        -> SelectMany Late_Reward => #7
            SubscribeSubject Sa => #0
            SubscribeSubject Sb => #1
            #0, #1 -> Zip
            -> LessThan => #3
            -> Condition "Sa < Sb"
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany RewardLeft
                WorkflowInput Source1
                -> Disable SelectMany RewardTone(Description=SoundCard)
                    SubscribeSubject RewardDur
                    -> PropertyMapping(DueTime) => #1
                    WorkflowInput Source1 => #2
                    ExternalizedMapping(SoundLevel) => #3
                    Source2=#2, Source2=#3 -> Sink SetLevel => #4
                        ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                        WorkflowInput Source1 => #1
                        #1, #0 -> IntProperty(Value=80)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=360)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    SubscribeSubject RewardID
                    -> PropertyMapping(Value) => #6
                    #4, #6 -> IntProperty(Value=5)
                    -> Take(Count=1)
                    -> MulticastSubject SoundIndex
                    -> Timestamp
                    -> MemberSelector(Selector=Timestamp.TimeOfDay)
                    -> MulticastSubject RewardToneTime => #12
                    #12, #1 -> Delay(DueTime=PT0.8S)
                    -> WorkflowOutput
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke1Valve)
                -> MulticastSubject BehModule => #3
                SubscribeSubject LeftValveTime
                -> PropertyMapping(DueTime) => #5
                #3, #5 -> Delay(DueTime=PT0.047S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve)
                -> MulticastSubject BehModule
                -> WorkflowOutput
            -> IntProperty(Value=1) => #6
            #3 -> Condition "Sa > Sb"
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> SelectMany RewardRight
                WorkflowInput Source1
                -> Disable SelectMany RewardTone(Description=SoundCard)
                    SubscribeSubject RewardDur
                    -> PropertyMapping(DueTime) => #1
                    WorkflowInput Source1 => #2
                    ExternalizedMapping(SoundLevel) => #3
                    Source2=#2, Source2=#3 -> Sink SetLevel => #4
                        ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                        WorkflowInput Source1 => #1
                        #1, #0 -> IntProperty(Value=80)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=360)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    SubscribeSubject RewardID
                    -> PropertyMapping(Value) => #6
                    #4, #6 -> IntProperty(Value=5)
                    -> Take(Count=1)
                    -> MulticastSubject SoundIndex
                    -> Timestamp
                    -> MemberSelector(Selector=Timestamp.TimeOfDay)
                    -> MulticastSubject RewardToneTime => #12
                    #12, #1 -> Delay(DueTime=PT0.8S)
                    -> WorkflowOutput
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve)
                -> MulticastSubject BehModule => #3
                SubscribeSubject RightValveTime
                -> PropertyMapping(DueTime) => #5
                #3, #5 -> Delay(DueTime=PT0.046S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve)
                -> MulticastSubject BehModule
                -> WorkflowOutput
            -> IntProperty(Value=2) => #9
            #6, #9 -> Merge
            -> MulticastSubject Rewarded_Side
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Condition No_Early_Lick
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=-1))
            -> WorkflowOutput
        -> SelectMany Automatic_Release => #9
            SubscribeSubject Sa => #0
            SubscribeSubject Sb => #1
            #0, #1 -> Zip
            -> LessThan => #3
            -> Condition "Sa < Sb"
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany RewardLeft
                WorkflowInput Source1
                -> Disable SelectMany RewardTone(Description=SoundCard)
                    SubscribeSubject RewardDur
                    -> PropertyMapping(DueTime) => #1
                    WorkflowInput Source1 => #2
                    ExternalizedMapping(SoundLevel) => #3
                    Source2=#2, Source2=#3 -> Sink SetLevel => #4
                        ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                        WorkflowInput Source1 => #1
                        #1, #0 -> IntProperty(Value=80)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=360)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    SubscribeSubject RewardID
                    -> PropertyMapping(Value) => #6
                    #4, #6 -> IntProperty(Value=5)
                    -> Take(Count=1)
                    -> MulticastSubject SoundIndex
                    -> Timestamp
                    -> MemberSelector(Selector=Timestamp.TimeOfDay)
                    -> MulticastSubject RewardToneTime => #12
                    #12, #1 -> Delay(DueTime=PT0.8S)
                    -> WorkflowOutput
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke1Valve)
                -> MulticastSubject BehModule => #3
                SubscribeSubject LeftValveTime
                -> PropertyMapping(DueTime) => #5
                #3, #5 -> Delay(DueTime=PT0.047S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve)
                -> MulticastSubject BehModule
                -> WorkflowOutput
            -> IntProperty(Value=1) => #6
            #3 -> Condition "Sa > Sb"
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> SelectMany RewardRight
                WorkflowInput Source1
                -> Disable SelectMany RewardTone(Description=SoundCard)
                    SubscribeSubject RewardDur
                    -> PropertyMapping(DueTime) => #1
                    WorkflowInput Source1 => #2
                    ExternalizedMapping(SoundLevel) => #3
                    Source2=#2, Source2=#3 -> Sink SetLevel => #4
                        ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                        WorkflowInput Source1 => #1
                        #1, #0 -> IntProperty(Value=80)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=360)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    SubscribeSubject RewardID
                    -> PropertyMapping(Value) => #6
                    #4, #6 -> IntProperty(Value=5)
                    -> Take(Count=1)
                    -> MulticastSubject SoundIndex
                    -> Timestamp
                    -> MemberSelector(Selector=Timestamp.TimeOfDay)
                    -> MulticastSubject RewardToneTime => #12
                    #12, #1 -> Delay(DueTime=PT0.8S)
                    -> WorkflowOutput
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve)
                -> MulticastSubject BehModule => #3
                SubscribeSubject RightValveTime
                -> PropertyMapping(DueTime) => #5
                #3, #5 -> Delay(DueTime=PT0.046S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve)
                -> MulticastSubject BehModule
                -> WorkflowOutput
            -> IntProperty(Value=2) => #9
            #6, #9 -> Merge
            -> MulticastSubject Rewarded_Side
            -> Sink "Correct_Lick_Early = False"
                WorkflowInput Source1
                -> BooleanProperty(Value=false)
                -> MulticastSubject Correct_Early_Lick
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        #2, #7, #9 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> Sink IncrementTrial
        SubscribeSubject TrialNumber => #0
        IntProperty(Value=1) => #1
        #0, #1 -> Zip
        -> Add
        -> MulticastSubject TrialNumber
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput
    #7, #8 -> GroupWorkflow Record_Latency
        SubscribeSubject TrialEnd
        -> Condition => #1
            WorkflowInput Source1
            -> WorkflowOutput
        WorkflowInput Source1
        -> SelectMany Start_Timer => #3
            Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.001S)
            -> MulticastSubject Time
            -> WorkflowOutput
        WorkflowInput Source2
        -> BooleanProperty(Value=true) => #5
        #1, #5 -> Merge => #6
        #3, #6 -> TakeUntil
        -> TakeLast(Count=1)
        -> MulticastSubject "Response_Latency (ms)"
        -> WorkflowOutput
-> Sink EndTrial
    WorkflowInput Source1
    -> BooleanProperty(Value=true)
    -> MulticastSubject TrialEnd
    -> WorkflowOutput
-> Repeat => #14
#14, #7 -> TakeUntil
-> WorkflowOutput

ExternalizedMapping(Data_Path, Exp_Name, Animal_ID)
-> GroupWorkflow Control_Parameters
    ExternalizedMapping(Value(DisplayName=Data_Path))
    -> StringProperty(Value=../../Data) => #1
    ExternalizedMapping(Value(DisplayName=Exp_Name))
    -> StringProperty(Value=PWM_Habituation) => #3
    ExternalizedMapping(Value(DisplayName=Animal_ID))
    -> StringProperty(Value=QP017)
    -> BehaviorSubject Animal_ID => #6
    IntProperty(Value=0)
    -> Timestamp => #8
    -> MemberSelector(Selector=Timestamp.DateTime.Year) => #9
    #8 -> MemberSelector(Selector=Timestamp.DateTime.Month) => #10
    #8 -> MemberSelector(Selector=Timestamp.Date.Day) => #11
    #9, #10, #11 -> Zip
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1.toString() + "_" + Item2.toString() + "_" + Item3.toString() as date
        )
    -> MemberSelector(Selector=date) => #14
    #1, #3, #6, #14 -> Zip => #15
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Trial_Summary.csv" as Trial_Summary_File_Name
        )
    -> MemberSelector(Selector=Trial_Summary_File_Name)
    -> BehaviorSubject Trial_File_Name
    #15 -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Detected_Licks.csv" as Licks_File_Name
        )
    -> MemberSelector(Selector=Licks_File_Name)
    -> BehaviorSubject Licks_File_Name
    #15 -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Video_data.avi" as Video_File_Name
        )
    -> MemberSelector(Selector=Video_File_Name)
    -> BehaviorSubject Video_File_Name
    #15 -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Video_timestamps.txt" as Video_Timestamps_File_Name
        )
    -> MemberSelector(Selector=Video_Timestamps_File_Name)
    -> BehaviorSubject Video_Timestamps_File_Name

GroupWorkflow Save_Data
    SubscribeSubject TrialEnd
    -> Condition => #1
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject Animal_ID => #2
    SubscribeSubject Rewarded_Side => #3
    SubscribeSubject ITI => #4
    SubscribeSubject TrialNumber => #5
    SubscribeSubject GoCueDur => #6
    SubscribeSubject Trial_File_Name
    -> PropertyMapping(FileName) => #8
    SubscribeSubject WNDur => #9
    SubscribeSubject DelayPeriod => #10
    SubscribeSubject Sa => #11
    SubscribeSubject Sb => #12
    SubscribeSubject Correct_Early_Lick => #13
    SubscribeSubject Early_Lick => #14
    SubscribeSubject Correct_Early_Lick_Count => #15
    #2, #5, #3, #14, #13, #15, #6 -> CombineLatest => #16
    SubscribeSubject "Response_Latency (ms)" => #17
    #11, #12, #10, #4, #9, #17 -> CombineLatest => #18
    #16, #18 -> CombineLatest => #19
    #19, #1 -> Sample
    -> Timestamp => #21
    -> MemberSelector(Selector=Value) => #22
    #21 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #23
    #22, #23 -> Zip
    -> Bonsai.Scripting.ExpressionTransform => #25
      Expression:
        new(
        Item1.Item1.Item1 as Animal_ID,
        Item1.Item1.Item2 as Trial_Number,
        Item1.Item1.Item3 as Rewarded_Side,
        Item1.Item1.Item4 as Early_Lick,
        Item1.Item1.Item5 as Correct_Early_Lick,
        Item1.Item1.Item6 as Correct_Early_Lick_Count,
        Item1.Item1.Item7 as Go_Cue_Duration,

        Item1.Item2.Item1 as Sa,
        Item1.Item2.Item2 as Sb,
        Item1.Item2.Item3 as Delay_Period,
        Item1.Item2.Item4 as ITI,
        Item1.Item2.Item5 as WN_Duration,
        Item1.Item2.Item6 as Response_Latency,


        Item2 as Time
        )
    #25, #8 -> Bonsai.IO.CsvWriter(FileName=../../Data/QP017/PWM_Habituation_QP017_2022_7_19/Trial_Summary.csv, Append=true, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    -> WorkflowOutput

    SubscribeSubject Beam1Bool => #28
    -> Timestamp => #29
    -> MemberSelector(Selector=Value) => #30
    #29 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #31
    #28 -> StringProperty(Value=Beam1Bool) => #32
    #30, #31, #32 -> Zip => #33
    SubscribeSubject Beam2Bool => #34
    -> Timestamp => #35
    -> MemberSelector(Selector=Value) => #36
    #35 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #37
    #34 -> StringProperty(Value=Beam2Bool) => #38
    #36, #37, #38 -> Zip => #39
    #33, #39 -> Merge
    -> Bonsai.Scripting.ExpressionTransform => #41
      Expression:
        new(
        Item1 as State,
        Item2 as Time,
        Item3 as Spout
        )
    SubscribeSubject Licks_File_Name
    -> PropertyMapping(FileName) => #43
    #41, #43 -> Bonsai.IO.CsvWriter
      FileName=../../Data/QP017/PWM_Habituation_QP017_2022_7_19/Detected_Licks.csv
      Delimiter=","
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true

GroupWorkflow Stats
  Description:
    Light Blue = Percent_Correct_Early_Lick
    Red = Normalised_Response_Latency
    Orange = Percent_Early_Lick
  Workflow
    GroupWorkflow Percent_Correct_Early_Lick => #0
        SubscribeSubject Visualizer_Window_Size => #0
        -> PropertyMapping(Value) => #1
        #0 -> PropertyMapping(Count) => #2
        SubscribeSubject Correct_Early_Lick_Count => #3
        SubscribeSubject Early_Lick
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> FloatProperty(Value=1)
        -> Accumulate
        -> Subtract(Operand=FloatProperty(Value=1)) => #8
        #3, #8 -> Zip
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> GreaterThan(Operand=FloatProperty(Value=0))
            -> WorkflowOutput
        -> Divide => #11
        #11, #2 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #14
        #14, #1 -> Divide(Operand=DoubleProperty(Value=20))
        -> WorkflowOutput

        Disable SubscribeSubject Visualizer_Window_Size => #17
        -> Disable PropertyMapping(Value) => #18
        #17 -> Disable PropertyMapping(Count) => #19
        Disable SubscribeSubject CorrectCount => #20
        Disable SubscribeSubject AbortTrial
        -> Disable Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> Disable SubscribeSubject TrialNumber
        -> Disable FloatProperty(Value=1)
        -> Disable Accumulate
        -> Disable Subtract(Operand=FloatProperty(Value=1)) => #26
        #20, #26 -> Disable CombineLatest
        -> Disable Zip
        -> Disable Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> GreaterThan(Operand=FloatProperty(Value=0))
            -> WorkflowOutput
        -> Disable Divide => #30
        #30, #19 -> Disable Bonsai.Dsp.Buffer(Count=30, Skip=1)
        -> Disable Bonsai.Dsp.Sum
        -> Disable MemberSelector(Selector=Val0) => #33
        #33, #18 -> Disable Divide(Operand=DoubleProperty(Value=30))
        -> Disable WorkflowOutput
    GroupWorkflow Percent_Early_Lick => #1
        SubscribeSubject Visualizer_Window_Size => #0
        -> PropertyMapping(Value) => #1
        #0 -> PropertyMapping(Count) => #2
        SubscribeSubject TrialNumber
        -> FloatProperty(Value=1)
        -> Accumulate
        -> Disable Subtract(Operand=FloatProperty(Value=1)) => #6
        SubscribeSubject Early_Lick
        -> Skip(Count=1)
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1)
        -> Disable Merge
        -> Accumulate => #12
        #12, #6 -> Zip
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> GreaterThan(Operand=FloatProperty(Value=0))
            -> WorkflowOutput
        -> Divide => #15
        #15, #2 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #18
        #18, #1 -> Divide(Operand=DoubleProperty(Value=20))
        -> WorkflowOutput
    GroupWorkflow Count_%_Right_Licks(Description="Calculate rolling average oif correct trials over window of desired size-") => #2
        Disable SubscribeSubject Early_Lick
        -> Disable Condition
            WorkflowInput Source1
            -> WorkflowOutput

        SubscribeSubject FirstLick => #2
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> IntProperty(Value=0) => #4
        #2 -> Condition
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> IntProperty(Value=1) => #6
        #4, #6 -> Merge => #7
        SubscribeSubject Visualizer_Window_Size => #8
        -> PropertyMapping(Value) => #9
        #8 -> PropertyMapping(Count) => #10
        #7, #10 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #13
        #13, #9 -> Divide(Operand=DoubleProperty(Value=20))
        -> MulticastSubject Percent_Right_Licks
        -> WorkflowOutput
    GroupWorkflow Average_Normalised_Latency => #3
        SubscribeSubject Visualizer_Window_Size => #0
        -> PropertyMapping(Value) => #1
        #0 -> PropertyMapping(Count) => #2
        SubscribeSubject "Response_Latency (ms)" => #3
        #3, #2 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #6
        #6, #1 -> Divide(Operand=DoubleProperty(Value=20)) => #7
        SubscribeSubject Reward_Delay_Time
        -> MemberSelector(Selector=TotalSeconds)
        -> Multiply(Operand=DoubleProperty(Value=1000))
        -> PropertyMapping(Value) => #11
        #7, #11 -> Divide(Operand=DoubleProperty(Value=1000))
        -> WorkflowOutput
    DoubleProperty(Value=0) => #4
    #1, #4 -> Merge => #5
    DoubleProperty(Value=0) => #6
    #0, #6 -> Merge => #7
    DoubleProperty(Value=0) => #8
    #3, #8 -> Merge => #9
    DoubleProperty(Value=0) => #10
    #2, #10 -> Merge => #11
    #7, #9, #5, #11 -> CombineLatest
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1 as Percent_Correct_Early_Lick,
        Item2 as Normalised_Response_Latency,
        Item3 as Percent_Early_Lick,
        Item4 as Right_Bias
        )
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(ValueSelector="Percent_Correct_Early_Lick,Percent_Early_Lick,Normalised_Response_Latency,Right_Bias", Capacity=nil)
    -> WorkflowOutput

Disable Timer(DueTime=PT0S, Period=PT0.1S)
-> Disable SelectMany Sim_Mouse
    Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
    -> Bonsai.Numerics.Distributions.Sample => #1
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> SelectMany => #3
        BooleanProperty(Value=false)
        -> MulticastSubject Beam1Bool
        -> BooleanProperty(Value=true)
        -> MulticastSubject Beam1Bool
        -> Take(Count=1)
        -> WorkflowOutput
    #1 -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> SelectMany => #5
        BooleanProperty(Value=false)
        -> MulticastSubject Beam2Bool
        -> BooleanProperty(Value=true)
        -> MulticastSubject Beam2Bool
        -> Take(Count=1)
        -> WorkflowOutput
    #3, #5 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput

Disable SubscribeSubject Beam1Bool
Disable SubscribeSubject Beam2Bool
