WorkflowBuilder(Version=2.6.3)
GroupWorkflow CameraStreaming
    Bonsai.Osc.CreateTcpServer(Name=Emitter, Port=1234, NoDelay=false, AllowNatTraversal=false)

    SubscribeSubject Video_File_Name
    -> PropertyMapping(FileName) => #2
    Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="") => #3
    -> DelaySubscription(DueTime=PT1S) => #4
    #4, #2 -> Bonsai.Vision.VideoWriter
      FileName=../../Data/TEST/PWM_Lick_To_Release_TEST_2022_9_5/Video_data.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=true
      FourCC=FMP4
      FrameRate=60
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    #4 -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #7
    SubscribeSubject Video_Timestamps_File_Name
    -> PropertyMapping(FileName) => #9
    #7, #9 -> Bonsai.IO.TextWriter(FileName=../../Data/TEST/PWM_Lick_To_Release_TEST_2022_9_5/Video_timestamps.txt, Suffix=Timestamp, Buffered=true, Overwrite=false, Append=false)
    #4 -> Bonsai.Dsp.ConvertToArray(Depth=nil)
    -> Bonsai.Osc.SendMessage(Connection=Emitter, Address=/tcpimage)
    #3 -> Disable Bonsai.Dsp.ConvertToArray(Depth=nil)
    -> Disable Bonsai.Osc.SendMessage(Connection=Emitter, Address=/tcpimage)

GroupWorkflow HarpSoundCard
    SubscribeSubject PlaySound
    -> Skip(Count=1) => #1
    SubscribeSubject Soundcard?
    -> Condition => #3
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=true))
        -> WorkflowOutput
    SubscribeSubject SoundIndex
    -> Skip(Count=1)
    -> Timestamp
    -> MemberSelector(Selector=Timestamp) => #7
    Disable SubscribeSubject Volume
    -> Disable Skip(Count=1)
    -> Disable Bonsai.Scripting.ExpressionTransform => #10
      Expression: uint16(it)
    SubscribeSubject Freq
    -> Skip(Count=1)
    -> Bonsai.Scripting.PythonTransform
      Script:
        @returns(float)
        def process(value):
          return 2**value
    -> Bonsai.Scripting.ExpressionTransform
      Expression: uint16(it)
    -> Bonsai.Harp.Format(MessageType=Write, Address=32, PayloadType=U16) => #15
    Disable SubscribeSubject PlayTone
    -> Disable Skip(Count=1)
    -> Disable IntProperty(Value=32)
    -> Disable Bonsai.Scripting.ExpressionTransform => #19
      Expression: uint16(it)
    #19, #10 -> Disable CombineLatest
    -> Disable SelectMany ToArray
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1) => #1
        #0 -> MemberSelector(Selector=Item2) => #2
        #1, #2 -> Merge
        -> ToArray
        -> WorkflowOutput
    -> Disable IntProperty(Value=1)
    -> Disable Bonsai.Harp.Format(MessageType=Write, Address=36, PayloadType=U16) => #23
    SubscribeSubject StopSound
    -> IntProperty(Value=3)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: byte(it)
    -> Bonsai.Harp.Format(MessageType=Write, Address=33, PayloadType=U8) => #27
    SubscribeSubject Volume
    -> Skip(Count=1)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: uint16(it)
    -> Sink
        WorkflowInput Source1
        -> Bonsai.Harp.Format(MessageType=Write, Address=34, PayloadType=U8)
        -> WorkflowOutput
    -> Bonsai.Harp.Format(MessageType=Write, Address=35, PayloadType=U8) => #32
    #23, #15, #27, #32 -> Merge => #33
    #1, #33 -> Merge => #34
    ExternalizedMapping(PortName) => #35
    #34, #35 -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM3) => #36
    #36, #3 -> SubscribeWhen
    #34 -> Timestamp
    -> MemberSelector(Selector=Timestamp) => #39
    #39, #7 -> Zip
    -> Subtract

    IntProperty(Value=0)
    -> BehaviorSubject SoundIndex

    SubscribeSubject SoundIndex
    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U16, Payload=0)
    -> BehaviorSubject PlaySound

    ExternalizedMapping(Value(DisplayName=Soundcard?))
    -> BooleanProperty(Value=true)
    -> BehaviorSubject Soundcard?

    FloatProperty(Value=11.5)
    -> BehaviorSubject Freq

    IntProperty(Value=1000)
    -> BehaviorSubject Volume

    SubscribeSubject Freq
    -> BehaviorSubject PlayTone

    Disable Bonsai.Windows.Input.KeyDown(Filter=End, SuppressRepetitions=false)
    -> IntProperty(Value=3)
    -> BehaviorSubject StopSound

    FloatProperty(Value=11.96578)
    -> BehaviorSubject 4kHz

    FloatProperty(Value=13.96578)
    -> BehaviorSubject 16kHz

    FloatProperty(Value=12.96578)
    -> BehaviorSubject 8kHz

GroupWorkflow HarpBeh
  Description:
    Workflows to connect and interact with Harp Behaviour Module

    Will initialise device and create subjects:

    BehModuleInput -- Messagebytes -- output from devicecommand node to issue outputs to harp board

    BehBytes -- bytesarray -- messagebytes output to be written to .bin file with MatrixWriter node

    BeamXbool -- bool -- readout  for hi/lo state of photogate/lickspout connected to ethernet breakout ports
  Workflow
    Disable BooleanProperty(Value=false)
    -> Disable BehaviorSubject Beam0Bool
    -> Disable BehaviorSubject Beam1Bool
    -> Disable BehaviorSubject Beam2Bool

    BooleanProperty(Value=false)
    -> Bonsai.Harp.Format(MessageType=Write, Address=32, PayloadType=U8)
    -> BehaviorSubject BehModule

    ByteProperty(Value=0)
    -> ToArray
    -> BehaviorSubject BehBytes

    SubscribeSubject BehModule
    -> Skip(Count=1) => #11
    Disable SubscribeSubject Emulate
    -> Disable Equal(Operand=BooleanProperty(Value=false))
    -> Disable Condition => #14
        WorkflowInput Source1
        -> WorkflowOutput
    ExternalizedMapping(PortName) => #15
    #11, #15 -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM4) => #16
    #16, #14 -> Disable SubscribeWhen => #17
    -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke0InfraRedBeam)
    -> BehaviorSubject Beam0Bool
    #17 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke1InfraRedBeam)
    -> BehaviorSubject Beam1Bool
    #17 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke2InfraRedBeam)
    -> BehaviorSubject Beam2Bool
    #17 -> MemberSelector(Selector=MessageBytes)
    -> MulticastSubject BehBytes

    SubscribeSubject BehBytes
    -> Bonsai.Dsp.MatrixWriter(Path=C:\bonsai\bonsaiprotocols\base4harp\Beh_Hit_Data.bin, Suffix=FileCount, Overwrite=false, Layout=ColumnMajor)

    Disable GroupWorkflow Emulate(Description="Runs when emulate is True")
        Bonsai.Windows.Input.KeyDown(Filter=Down, SuppressRepetitions=false)
        -> BooleanProperty(Value=true) => #1
        Bonsai.Windows.Input.KeyUp(Filter=Down)
        -> BooleanProperty(Value=false) => #3
        #1, #3 -> Merge => #4
        SubscribeSubject Emulate
        -> Condition => #6
            WorkflowInput Source1
            -> WorkflowOutput
        #4, #6 -> SubscribeWhen
        -> MulticastSubject Beam0Bool

        Bonsai.Windows.Input.KeyDown(Filter=Up, SuppressRepetitions=false)
        -> BooleanProperty(Value=true) => #10
        Bonsai.Windows.Input.KeyUp(Filter=Up)
        -> BooleanProperty(Value=false) => #12
        #10, #12 -> Merge => #13
        SubscribeSubject Emulate
        -> Condition => #15
            WorkflowInput Source1
            -> WorkflowOutput
        #13, #15 -> SubscribeWhen
        -> MulticastSubject Beam1Bool

        Bonsai.Windows.Input.KeyDown(Filter=D2, SuppressRepetitions=false)
        -> BooleanProperty(Value=true) => #19
        Bonsai.Windows.Input.KeyUp(Filter=D2)
        -> BooleanProperty(Value=false) => #21
        #19, #21 -> Merge => #22
        SubscribeSubject Emulate
        -> Condition => #24
            WorkflowInput Source1
            -> WorkflowOutput
        #22, #24 -> SubscribeWhen
        -> MulticastSubject Beam2Bool

        Disable Bonsai.Windows.Input.KeyDown(Filter=None, SuppressRepetitions=false)
        -> Disable Bonsai.Audio.PlaySource(DeviceName="Generic Software on Speakers (Realtek High Definition Audio(SST))")

        Bonsai.Audio.CreateAudioContext(SampleRate=0, Refresh=0, Position(X=0, Y=0, Z=0), Velocity(X=0, Y=0, Z=0), Direction(X=-0, Y=-0, Z=-1), Up(X=0, Y=1, Z=0), Gain=1)
        -> Bonsai.Audio.AudioResources
          Buffers
            BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=i03_WhiteNoise, FileName=C:\bonsai\bonsaiprotocols\Sound\toSoundCard\03_WhiteNoise.wav)
            BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=i05_RewardTone_32bit_stereo_nohead, FileName=C:\Users\Dammy\Documents\HarpSoundCard\Interface\toSoundCard\i05_RewardTone_32bit_stereo_nohead.bin)
            BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=i05_GoCue, FileName=C:\Users\Dammy\Documents\HarpSoundCard\Interface\toSoundCard\i05_GoCue.bin)
            BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=i07_ViolationTone, FileName=C:\Users\Dammy\Documents\HarpSoundCard\Interface\toSoundCard\i07_ViolationTone.bin)
            BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=i08_TimeoutTone, FileName=C:\Users\Dammy\Documents\HarpSoundCard\Interface\toSoundCard\i08_TimeoutTone.bin)
            BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=i30_stop, FileName=C:\Users\Dammy\Documents\HarpSoundCard\Interface\toSoundCard\i30_stop.bin)
          Sources
            SourceConfiguration
              Name=WhiteNoise
              BufferName=i02_WhiteNoise
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Initial
            SourceConfiguration
              Name=RewardTone
              BufferName=i05_RewardTone_32bit_stereo_nohead
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Initial
            SourceConfiguration
              Name=GoCue
              BufferName=i05_GoCue
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Initial
            SourceConfiguration
              Name=ViolTone
              BufferName=i07_ViolationTone
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Initial
            SourceConfiguration
              Name=TimeoutTone
              BufferName=i08_TimeoutTone
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Initial
            SourceConfiguration
              Name=Stop
              BufferName=i30_stop
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Initial
        -> Bonsai.Resources.LoadResources

        SubscribeSubject SoundIndex => #32
        SubscribeSubject Soundcard?
        -> Condition => #34
            WorkflowInput Source1
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        #32, #34 -> SubscribeWhen => #35
        -> Condition 2
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=WhiteNoise))
        #35 -> Condition 2
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=WhiteNoise))
        #35 -> Condition 2
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=WhiteNoise))

        BooleanProperty(Value=false)
        -> BehaviorSubject Emulate

GroupWorkflow Render_Loop
    Bonsai.Shaders.CreateWindow
      Width=1
      Height=1
      VSync=On
      SwapSync=false
      ClearColor=Black
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Minimized
      DisplayDevice=Primary
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false

    Bonsai.Shaders.Timer(DueTime=PT0S)

ExternalizedMapping("RightValveTime (ms)", "LeftValveTime (ms)", "ITI (s)", Visualizer_Window_Size, WN_Dur(DisplayName="WN_Dur (ms)"), "DelayPeriod (ms)", LowestAmp)
-> GroupWorkflow DynamicVariables
    ExternalizedMapping(Value(DisplayName="RightValveTime (ms)"))
    -> FloatProperty(Value=49)
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject RightValveTime

    ExternalizedMapping(Value(DisplayName="LeftValveTime (ms)"))
    -> FloatProperty(Value=48)
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject LeftValveTime

    ExternalizedMapping(Value(DisplayName="ITI (s)"))
    -> FloatProperty(Value=2)
    -> Bonsai.Scripting.ExpressionTransform TimeFromSeconds
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject ITI

    ExternalizedMapping(Value(DisplayName=Visualizer_Window_Size))
    -> IntProperty(Value=20)
    -> BehaviorSubject Visualizer_Window_Size

    ExternalizedMapping(Value(DisplayName=WN_Dur))
    -> FloatProperty(Value=400)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject WNDur

    ExternalizedMapping(Value(DisplayName="DelayPeriod (ms)"))
    -> FloatProperty(Value=400)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject DelayPeriod

    ExternalizedMapping(Value(DisplayName=LowestAmp))
    -> IntProperty(Value=60)
    -> BehaviorSubject LowestAmp

GroupWorkflow StaticVariables
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=1, Upper=3)
    -> BehaviorSubject DelayDistribution

    BooleanProperty(Value=false)
    -> BehaviorSubject Correct

    IntProperty(Value=0)
    -> BehaviorSubject FirstLick

    Bonsai.Shaders.Input.KeyDown(Key=End, Modifiers=nil)
    -> BehaviorSubject ExpEnd

    BooleanProperty(Value=false)
    -> BehaviorSubject TrialEnd

    IntProperty(Value=0)
    -> BehaviorSubject Tone

    StringProperty(Value=QP04)
    -> BehaviorSubject MouseID

    FloatProperty(Value=300)
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject ToneDur

    FloatProperty(Value=300)
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject GoCueDur

    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    IntProperty(Value=0)
    -> BehaviorSubject "RewSide "

    IntProperty(Value=0)
    -> BehaviorSubject Reward

    BooleanProperty(Value=false)
    -> BehaviorSubject AbortTrial

    FloatProperty(Value=0.5)
    -> BehaviorSubject %_Right_Licks

    IntProperty(Value=80)
    -> BehaviorSubject Sa

    IntProperty(Value=80)
    -> BehaviorSubject Sb

    IntProperty(Value=3)
    -> BehaviorSubject StimID

    IntProperty(Value=7)
    -> BehaviorSubject ViolID

    IntProperty(Value=6)
    -> BehaviorSubject GoCueID

    IntProperty(Value=0)
    -> BehaviorSubject SubsequentLick

    TimeSpanProperty(Value=PT0.1S)
    -> ReplaySubject ViolDur(BufferSize=nil)

    TimeSpanProperty(Value=PT0.8S)
    -> ReplaySubject RewardDur(BufferSize=nil)

    IntProperty(Value=5)
    -> BehaviorSubject RewardID

    IntProperty(Value=80)
    -> BehaviorSubject Amp1

    IntProperty(Value=80)
    -> BehaviorSubject Amp2

    IntProperty(Value=90)
    -> BehaviorSubject ToneAmp

    IntProperty(Value=0)
    -> BehaviorSubject Time

SubscribeSubject ExpEnd => #7
SubscribeSubject ITI
-> PropertyMapping(DueTime)
-> Timer(DueTime=PT2S, Period=PT0S)
-> Sink PrepTrial
    WorkflowInput Source1
    -> Sink GenAmps
        WorkflowInput Source1
        -> SelectMany GenAmp1
            ExternalizedMapping(Value(DisplayName=Spacing)) => #0
            SubscribeSubject LowestAmp
            -> PropertyMapping(Value)
            -> IntProperty(Value=60) => #3
            Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
            -> Bonsai.Numerics.Distributions.Sample => #5
            -> Condition c_0
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=upper_bound)) => #1
                #0, #1 -> LessThan(Operand=DoubleProperty(Value=0.125))
                -> WorkflowOutput
            -> IntProperty(Value=0) => #7
            #5 -> Condition c_1
                WorkflowInput Source1 => #0
                BooleanProperty(Value=true) => #1
                ExternalizedMapping(Value(DisplayName=lower_bound)) => #2
                #0, #2 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0.125)) => #3
                ExternalizedMapping(Value(DisplayName=upper_bound)) => #4
                #0, #4 -> LessThan(Operand=DoubleProperty(Value=0.375)) => #5
                #1, #3, #5 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            -> IntProperty(Value=1) => #9
            #5 -> Condition c_4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=lower_bound)) => #1
                #0, #1 -> GreaterThan(Operand=DoubleProperty(Value=0.875))
                -> WorkflowOutput
            -> IntProperty(Value=4) => #11
            #5 -> Condition c_2
                WorkflowInput Source1 => #0
                BooleanProperty(Value=true) => #1
                ExternalizedMapping(Value(DisplayName=lower_bound)) => #2
                #0, #2 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0.375)) => #3
                ExternalizedMapping(Value(DisplayName=upper_bound)) => #4
                #0, #4 -> LessThan(Operand=DoubleProperty(Value=0.625)) => #5
                #1, #3, #5 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            -> IntProperty(Value=2) => #13
            #5 -> Condition c_3
                WorkflowInput Source1 => #0
                BooleanProperty(Value=true) => #1
                ExternalizedMapping(Value(DisplayName=lower_bound)) => #2
                #0, #2 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0.625)) => #3
                ExternalizedMapping(Value(DisplayName=upper_bound)) => #4
                #0, #4 -> LessThan(Operand=DoubleProperty(Value=0.875)) => #5
                #1, #3, #5 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            -> IntProperty(Value=3) => #15
            #7, #9, #13, #15, #11 -> Merge
            -> Take(Count=1) => #17
            #17, #0 -> Multiply(Operand=IntProperty(Value=8)) => #18
            #18, #3 -> Zip
            -> Add
            -> WorkflowOutput
        -> MulticastSubject Amp1
        -> SelectMany GenAmp2
            WorkflowInput Source1
            -> Take(Count=1) => #1
            SubscribeSubject LowestAmp => #2
            -> PropertyMapping(lower) => #3
            #2 -> Add(Operand=IntProperty(Value=32))
            -> PropertyMapping(upper) => #5
            #1, #3, #5 -> Condition Middles
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=lower)) => #1
                #0, #1 -> GreaterThan(Operand=IntProperty(Value=60)) => #2
                ExternalizedMapping(Value(DisplayName=upper)) => #3
                #0, #3 -> LessThan(Operand=IntProperty(Value=92)) => #4
                #0 -> BooleanProperty(Value=true) => #5
                #2, #4, #5 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            -> SelectMany +/- => #7
                WorkflowInput Source1 => #0
                Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample => #2
                -> Condition 0
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> LessThanOrEqual(Operand=DoubleProperty(Value=0.5))
                    -> WorkflowOutput
                -> IntProperty(Value=8) => #4
                #2 -> Condition 1
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> GreaterThan(Operand=DoubleProperty(Value=0.5))
                    -> WorkflowOutput
                -> IntProperty(Value=-8) => #6
                #4, #6 -> Merge => #7
                #0, #7 -> Zip
                -> Add
                -> WorkflowOutput
            #1, #3 -> Condition lower
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=lower)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=60))
                -> WorkflowOutput
            -> Add(Operand=IntProperty(Value=8)) => #9
            #1, #5 -> Condition upper
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=upper)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=92))
                -> WorkflowOutput
            -> Add(Operand=IntProperty(Value=-8)) => #11
            #9, #7, #11 -> Merge
            -> WorkflowOutput
        -> MulticastSubject Amp2
        -> WorkflowOutput
    -> Sink SetSpoutsOff
        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject Beam1Bool

        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject Beam2Bool

        Disable SubscribeSubject Beam0Bool
        -> Disable Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> Disable BooleanProperty(Value=true)
        -> Disable MulticastSubject Beam0Bool
    -> Disable Sink ResetAttempts
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> MulticastSubject Attempts
        -> WorkflowOutput
    -> Sink CheckValvesClosed
        WorkflowInput Source1 => #0
        -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve)
        -> MulticastSubject BehModule => #2
        #0 -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve)
        -> MulticastSubject BehModule => #4
        #2, #4 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> Sink "TrialEnd = False"
        WorkflowInput Source1
        -> BooleanProperty(Value=false)
        -> MulticastSubject TrialEnd
        -> WorkflowOutput
    -> WorkflowOutput
-> Disable SelectMany Trial
    WorkflowInput Source1
    -> Sink GenAmps
        WorkflowInput Source1
        -> SelectMany GenAmp1
            ExternalizedMapping(Value(DisplayName=Spacing)) => #0
            SubscribeSubject LowestAmp
            -> PropertyMapping(Value)
            -> IntProperty(Value=60) => #3
            Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
            -> Bonsai.Numerics.Distributions.Sample => #5
            -> Condition c_0
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=upper_bound)) => #1
                #0, #1 -> LessThan(Operand=DoubleProperty(Value=0.125))
                -> WorkflowOutput
            -> IntProperty(Value=0) => #7
            #5 -> Condition c_1
                WorkflowInput Source1 => #0
                BooleanProperty(Value=true) => #1
                ExternalizedMapping(Value(DisplayName=lower_bound)) => #2
                #0, #2 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0.125)) => #3
                ExternalizedMapping(Value(DisplayName=upper_bound)) => #4
                #0, #4 -> LessThan(Operand=DoubleProperty(Value=0.375)) => #5
                #1, #3, #5 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            -> IntProperty(Value=1) => #9
            #5 -> Condition c_4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=lower_bound)) => #1
                #0, #1 -> GreaterThan(Operand=DoubleProperty(Value=0.875))
                -> WorkflowOutput
            -> IntProperty(Value=4) => #11
            #5 -> Condition c_2
                WorkflowInput Source1 => #0
                BooleanProperty(Value=true) => #1
                ExternalizedMapping(Value(DisplayName=lower_bound)) => #2
                #0, #2 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0.375)) => #3
                ExternalizedMapping(Value(DisplayName=upper_bound)) => #4
                #0, #4 -> LessThan(Operand=DoubleProperty(Value=0.625)) => #5
                #1, #3, #5 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            -> IntProperty(Value=2) => #13
            #5 -> Condition c_3
                WorkflowInput Source1 => #0
                BooleanProperty(Value=true) => #1
                ExternalizedMapping(Value(DisplayName=lower_bound)) => #2
                #0, #2 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0.625)) => #3
                ExternalizedMapping(Value(DisplayName=upper_bound)) => #4
                #0, #4 -> LessThan(Operand=DoubleProperty(Value=0.875)) => #5
                #1, #3, #5 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            -> IntProperty(Value=3) => #15
            #7, #9, #13, #15, #11 -> Merge
            -> Take(Count=1) => #17
            #17, #0 -> Multiply(Operand=IntProperty(Value=8)) => #18
            #18, #3 -> Zip
            -> Add
            -> WorkflowOutput
        -> MulticastSubject Amp1
        -> SelectMany GenAmp2
            WorkflowInput Source1
            -> Take(Count=1) => #1
            SubscribeSubject LowestAmp => #2
            -> PropertyMapping(lower) => #3
            #2 -> Add(Operand=IntProperty(Value=32))
            -> PropertyMapping(upper) => #5
            #1, #3, #5 -> Condition Middles
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=lower)) => #1
                #0, #1 -> GreaterThan(Operand=IntProperty(Value=60)) => #2
                ExternalizedMapping(Value(DisplayName=upper)) => #3
                #0, #3 -> LessThan(Operand=IntProperty(Value=92)) => #4
                #0 -> BooleanProperty(Value=true) => #5
                #2, #4, #5 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            -> SelectMany +/- => #7
                WorkflowInput Source1 => #0
                Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample => #2
                -> Condition 0
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> LessThanOrEqual(Operand=DoubleProperty(Value=0.5))
                    -> WorkflowOutput
                -> IntProperty(Value=8) => #4
                #2 -> Condition 1
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> GreaterThan(Operand=DoubleProperty(Value=0.5))
                    -> WorkflowOutput
                -> IntProperty(Value=-8) => #6
                #4, #6 -> Merge => #7
                #0, #7 -> Zip
                -> Add
                -> WorkflowOutput
            #1, #3 -> Condition lower
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=lower)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=60))
                -> WorkflowOutput
            -> Add(Operand=IntProperty(Value=8)) => #9
            #1, #5 -> Condition upper
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=upper)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=92))
                -> WorkflowOutput
            -> Add(Operand=IntProperty(Value=-8)) => #11
            #9, #7, #11 -> Merge
            -> WorkflowOutput
        -> MulticastSubject Amp2
        -> WorkflowOutput
    -> SelectMany AntiBias
        Disable SubscribeSubject TrialNumber => #0
        -> Disable Condition "Trial_Number > AntiBias_Window"
            WorkflowInput Source1 => #0
            SubscribeSubject Anti_Bias_Window
            -> PropertyMapping(Value) => #2
            #0, #2 -> GreaterThan(Operand=IntProperty(Value=3))
            -> Take(Count=1)
            -> WorkflowOutput
        -> Disable SelectMany Start_AntiBias => #2
            SubscribeSubject %_Right_Licks
            -> Take(Count=1) => #1
            -> Condition Below_30%
                WorkflowInput Source1
                -> LessThan(Operand=FloatProperty(Value=0.3))
                -> WorkflowOutput
            -> SelectMany "Sa > Sb" => #3
                SubscribeSubject Amp1 => #0
                -> Condition "Amp1 > Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThan(Operand=IntProperty(Value=80))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp1" => #2
                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Condition "Amp1 < Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=80))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp2" => #4
                    SubscribeSubject Amp2
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp1
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #1 -> Condition Above_30%
                WorkflowInput Source1
                -> GreaterThan(Operand=FloatProperty(Value=0.7))
                -> WorkflowOutput
            -> SelectMany "Sa < Sb" => #5
                SubscribeSubject Amp1 => #0
                -> Condition "Amp1 > Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThan(Operand=IntProperty(Value=84))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp2" => #2
                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Condition "Amp1 < Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=84))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp1" => #4
                    SubscribeSubject Amp2
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp1
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #1 -> Condition Random
                WorkflowInput Source1 => #0
                -> LessThanOrEqual(Operand=FloatProperty(Value=0.7)) => #1
                #0 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.3)) => #2
                #1, #2 -> Zip
                -> LogicalAnd
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany "Sa = Amp1 & Sb = Amp2"
                Disable Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
                -> Disable Bonsai.Numerics.Distributions.Sample
                -> Disable Take(Count=1) => #2
                -> Disable Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=0))
                    -> WorkflowOutput
                -> Disable SelectMany "Sa > Sb" => #4
                    Disable SubscribeSubject Amp1 => #0
                    -> Disable Condition "Amp1 > Amp2"
                        WorkflowInput Source1 => #0
                        SubscribeSubject Amp2
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> GreaterThan(Operand=IntProperty(Value=56))
                        -> WorkflowOutput
                    -> Disable SelectMany "Sa = Amp1" => #2
                        SubscribeSubject Amp1
                        -> MulticastSubject Sa => #1
                        SubscribeSubject Amp2
                        -> MulticastSubject Sb => #3
                        #1, #3 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Disable Condition "Amp1 < Amp2"
                        WorkflowInput Source1 => #0
                        SubscribeSubject Amp2
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> LessThan(Operand=IntProperty(Value=56))
                        -> WorkflowOutput
                    -> Disable SelectMany "Sa = Amp2" => #4
                        SubscribeSubject Amp2
                        -> MulticastSubject Sa => #1
                        SubscribeSubject Amp1
                        -> MulticastSubject Sb => #3
                        #1, #3 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #2, #4 -> Disable Merge
                    -> Disable Take(Count=1)
                    -> Disable WorkflowOutput

                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #9
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #11
                    #9, #11 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2 -> Disable Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> Disable SelectMany "Sa < Sb" => #6
                    SubscribeSubject Amp1 => #0
                    -> Condition "Amp1 > Amp2"
                        WorkflowInput Source1 => #0
                        SubscribeSubject Amp2
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> GreaterThan(Operand=IntProperty(Value=64))
                        -> WorkflowOutput
                    -> SelectMany "Sa = Amp2" => #2
                        SubscribeSubject Amp1
                        -> MulticastSubject Sa => #1
                        SubscribeSubject Amp2
                        -> MulticastSubject Sb => #3
                        #1, #3 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Condition "Amp1 < Amp2"
                        WorkflowInput Source1 => #0
                        SubscribeSubject Amp2
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> LessThan(Operand=IntProperty(Value=64))
                        -> WorkflowOutput
                    -> SelectMany "Sa = Amp1" => #4
                        SubscribeSubject Amp2
                        -> MulticastSubject Sa => #1
                        SubscribeSubject Amp1
                        -> MulticastSubject Sb => #3
                        #1, #3 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #2, #4 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #4, #6 -> Disable Merge
                -> Disable Take(Count=1)
                -> Disable WorkflowOutput

                SubscribeSubject Amp1
                -> MulticastSubject Sa => #11
                SubscribeSubject Amp2
                -> MulticastSubject Sb => #13
                #11, #13 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            -> Disable SelectMany Create_Discrete_Uniform
                Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample
                -> Take(Count=1)
                -> WorkflowOutput
            -> Disable Take(Count=1) => #9
            -> Disable Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> Disable SelectMany "Sa > Sb" => #11
                SubscribeSubject Amp1 => #0
                -> Condition "Amp1 > Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThan(Operand=IntProperty(Value=64))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp1" => #2
                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Condition "Amp1 < Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=64))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp2" => #4
                    SubscribeSubject Amp2
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp1
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #9 -> Disable Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Disable SelectMany "Sa < Sb" => #13
                SubscribeSubject Amp1 => #0
                -> Condition "Amp1 > Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThan(Operand=IntProperty(Value=64))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp2" => #2
                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Condition "Amp1 < Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=64))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp1" => #4
                    SubscribeSubject Amp2
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp1
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #3, #5, #11, #13 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Disable Condition "Trial_Number =< AntiBias_Window"
            WorkflowInput Source1 => #0
            SubscribeSubject Anti_Bias_Window
            -> PropertyMapping(Value) => #2
            #0, #2 -> LessThanOrEqual(Operand=IntProperty(Value=3))
            -> Take(Count=1)
            -> WorkflowOutput
        -> Disable SelectMany "Sa = Amp1 & Sb = Amp2" => #4
            Disable Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
            -> Disable Bonsai.Numerics.Distributions.Sample
            -> Disable Take(Count=1) => #2
            -> Disable Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> Disable SelectMany "Sa > Sb" => #4
                Disable SubscribeSubject Amp1 => #0
                -> Disable Condition "Amp1 > Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThan(Operand=IntProperty(Value=56))
                    -> WorkflowOutput
                -> Disable SelectMany "Sa = Amp1" => #2
                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Disable Condition "Amp1 < Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=56))
                    -> WorkflowOutput
                -> Disable SelectMany "Sa = Amp2" => #4
                    SubscribeSubject Amp2
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp1
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Disable Merge
                -> Disable Take(Count=1)
                -> Disable WorkflowOutput

                SubscribeSubject Amp1
                -> MulticastSubject Sa => #9
                SubscribeSubject Amp2
                -> MulticastSubject Sb => #11
                #9, #11 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #2 -> Disable Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Disable SelectMany "Sa < Sb" => #6
                SubscribeSubject Amp1 => #0
                -> Condition "Amp1 > Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThan(Operand=IntProperty(Value=64))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp2" => #2
                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Condition "Amp1 < Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=64))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp1" => #4
                    SubscribeSubject Amp2
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp1
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #4, #6 -> Disable Merge
            -> Disable Take(Count=1)
            -> Disable WorkflowOutput

            SubscribeSubject Amp1
            -> MulticastSubject Sa => #11
            SubscribeSubject Amp2
            -> MulticastSubject Sb => #13
            #11, #13 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #2, #4 -> Disable Merge
        -> Disable Take(Count=1)
        -> Disable WorkflowOutput

        WorkflowInput Source1
        -> SelectMany Start_AntiBias
            SubscribeSubject %_Right_Licks
            -> Take(Count=1) => #1
            -> Condition Above_30%
                WorkflowInput Source1
                -> GreaterThan(Operand=FloatProperty(Value=0.7))
                -> WorkflowOutput
            -> SelectMany "Sa < Sb" => #3
                SubscribeSubject Amp1 => #0
                -> Condition "Amp1 > Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThan(Operand=IntProperty(Value=68))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp2" => #2
                    SubscribeSubject Amp2
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp1
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Condition "Amp1 < Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=68))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp1" => #4
                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #1 -> Condition Random
                WorkflowInput Source1 => #0
                -> LessThanOrEqual(Operand=FloatProperty(Value=0.7)) => #1
                #0 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.3)) => #2
                #1, #2 -> Zip
                -> LogicalAnd
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany "Sa = Amp1 & Sb = Amp2"
                Disable Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
                -> Disable Bonsai.Numerics.Distributions.Sample
                -> Disable Take(Count=1) => #2
                -> Disable Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=0))
                    -> WorkflowOutput
                -> Disable SelectMany "Sa > Sb" => #4
                    Disable SubscribeSubject Amp1 => #0
                    -> Disable Condition "Amp1 > Amp2"
                        WorkflowInput Source1 => #0
                        SubscribeSubject Amp2
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> GreaterThan(Operand=IntProperty(Value=56))
                        -> WorkflowOutput
                    -> Disable SelectMany "Sa = Amp1" => #2
                        SubscribeSubject Amp1
                        -> MulticastSubject Sa => #1
                        SubscribeSubject Amp2
                        -> MulticastSubject Sb => #3
                        #1, #3 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Disable Condition "Amp1 < Amp2"
                        WorkflowInput Source1 => #0
                        SubscribeSubject Amp2
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> LessThan(Operand=IntProperty(Value=56))
                        -> WorkflowOutput
                    -> Disable SelectMany "Sa = Amp2" => #4
                        SubscribeSubject Amp2
                        -> MulticastSubject Sa => #1
                        SubscribeSubject Amp1
                        -> MulticastSubject Sb => #3
                        #1, #3 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #2, #4 -> Disable Merge
                    -> Disable Take(Count=1)
                    -> Disable WorkflowOutput

                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #9
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #11
                    #9, #11 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2 -> Disable Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> Disable SelectMany "Sa < Sb" => #6
                    SubscribeSubject Amp1 => #0
                    -> Condition "Amp1 > Amp2"
                        WorkflowInput Source1 => #0
                        SubscribeSubject Amp2
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> GreaterThan(Operand=IntProperty(Value=64))
                        -> WorkflowOutput
                    -> SelectMany "Sa = Amp2" => #2
                        SubscribeSubject Amp1
                        -> MulticastSubject Sa => #1
                        SubscribeSubject Amp2
                        -> MulticastSubject Sb => #3
                        #1, #3 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Condition "Amp1 < Amp2"
                        WorkflowInput Source1 => #0
                        SubscribeSubject Amp2
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> LessThan(Operand=IntProperty(Value=64))
                        -> WorkflowOutput
                    -> SelectMany "Sa = Amp1" => #4
                        SubscribeSubject Amp2
                        -> MulticastSubject Sa => #1
                        SubscribeSubject Amp1
                        -> MulticastSubject Sb => #3
                        #1, #3 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #2, #4 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #4, #6 -> Disable Merge
                -> Disable Take(Count=1)
                -> Disable WorkflowOutput

                SubscribeSubject Amp1
                -> MulticastSubject Sa => #11
                SubscribeSubject Amp2
                -> MulticastSubject Sb => #13
                #11, #13 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            -> Disable SelectMany Create_Discrete_Uniform
                Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample
                -> Take(Count=1)
                -> WorkflowOutput
            -> Disable Take(Count=1) => #7
            -> Disable Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> Disable SelectMany "Sa > Sb" => #9
                SubscribeSubject Amp1 => #0
                -> Condition "Amp1 > Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThan(Operand=IntProperty(Value=64))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp1" => #2
                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Condition "Amp1 < Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=64))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp2" => #4
                    SubscribeSubject Amp2
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp1
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #7 -> Disable Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Disable SelectMany "Sa < Sb" => #11
                SubscribeSubject Amp1 => #0
                -> Condition "Amp1 > Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThan(Operand=IntProperty(Value=64))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp2" => #2
                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Condition "Amp1 < Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=64))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp1" => #4
                    SubscribeSubject Amp2
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp1
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #1 -> Condition Below_30%
                WorkflowInput Source1
                -> LessThan(Operand=FloatProperty(Value=0.3))
                -> WorkflowOutput
            -> SelectMany "Sa > Sb" => #13
                SubscribeSubject Amp1 => #0
                -> Condition "Amp1 > Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThan(Operand=IntProperty(Value=68))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp1" => #2
                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Condition "Amp1 < Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=68))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp2" => #4
                    SubscribeSubject Amp2
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp1
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #13, #3, #9, #11 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Sa
        WorkflowInput Source1 => #0
        SubscribeSubject Sa
        -> PropertyMapping(SoundLevel) => #2
        #0, #2 -> Sink SetLevel => #3
            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
            WorkflowInput Source1 => #1
            #1, #0 -> IntProperty(Value=76)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: (it-107.54)/-0.0764
            -> PropertyMapping(Value)
            -> IntProperty(Value=412)
            -> Sink Left
                WorkflowInput Source1
                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                -> MulticastSubject PlaySound
                -> WorkflowOutput
            -> Sink Right
                WorkflowInput Source1
                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                -> MulticastSubject PlaySound
                -> WorkflowOutput
            -> WorkflowOutput
        SubscribeSubject StimID
        -> PropertyMapping(Value) => #5
        #3, #5 -> IntProperty(Value=3)
        -> MulticastSubject SoundIndex => #7
        SubscribeSubject WNDur
        -> PropertyMapping(DueTime) => #9
        #7, #9 -> Delay(DueTime=PT0.4S)
        -> IntProperty(Value=30)
        -> MulticastSubject SoundIndex
        -> WorkflowOutput

        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #16
        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #19
        #16, #19 -> Merge
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> MulticastSubject EarlyLick
    -> SelectMany DelayPeriod
        Disable SubscribeSubject DelayDistribution
        -> Disable Bonsai.Numerics.Distributions.Sample
        -> Disable Bonsai.Scripting.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> Disable MulticastSubject DelayPeriod

        WorkflowInput Source1 => #4
        SubscribeSubject DelayPeriod
        -> PropertyMapping(DueTime) => #6
        #4, #6 -> Delay(DueTime=PT0.4S)
        -> Take(Count=1)
        -> WorkflowOutput

        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #12
        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #15
        #12, #15 -> Merge
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> MulticastSubject EarlyLick
    -> SelectMany Sb
        WorkflowInput Source1 => #0
        SubscribeSubject Sb
        -> PropertyMapping(SoundLevel) => #2
        #0, #2 -> Sink SetLevel => #3
            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
            WorkflowInput Source1 => #1
            #1, #0 -> IntProperty(Value=68)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: (it-107.54)/-0.0764
            -> PropertyMapping(Value)
            -> IntProperty(Value=517)
            -> Sink Left
                WorkflowInput Source1
                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                -> MulticastSubject PlaySound
                -> WorkflowOutput
            -> Sink Right
                WorkflowInput Source1
                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                -> MulticastSubject PlaySound
                -> WorkflowOutput
            -> WorkflowOutput
        SubscribeSubject StimID
        -> PropertyMapping(Value) => #5
        #3, #5 -> IntProperty(Value=3)
        -> MulticastSubject SoundIndex => #7
        SubscribeSubject WNDur
        -> PropertyMapping(DueTime) => #9
        #7, #9 -> Delay(DueTime=PT0.4S)
        -> IntProperty(Value=30)
        -> MulticastSubject SoundIndex
        -> Delay(DueTime=PT0.5S)
        -> WorkflowOutput

        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #17
        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #20
        #17, #20 -> Merge
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> MulticastSubject EarlyLick
    -> SelectMany Tone
        WorkflowInput Source1
        -> SelectMany 4Khz
            SubscribeSubject ToneDur
            -> PropertyMapping(DueTime) => #1
            SubscribeSubject 4kHz
            -> Sink SetLevel
                WorkflowInput Source1 => #0
                SubscribeSubject ToneAmp
                -> PropertyMapping(Value) => #2
                #0, #2 -> IntProperty(Value=90)
                -> Bonsai.Scripting.ExpressionTransform
                  Expression: (it-107.54)/-0.0764
                -> PropertyMapping(Value)
                -> IntProperty(Value=229)
                -> Sink Left
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> Sink Right
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> WorkflowOutput
            -> MulticastSubject Freq => #4
            #4, #1 -> Delay(DueTime=PT0.3S)
            -> IntProperty(Value=3)
            -> MulticastSubject StopSound
            -> IntProperty(Value=8)
            -> MulticastSubject Tone
            -> Take(Count=1)
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany GoCue => #7
        WorkflowInput Source1 => #0
        SubscribeSubject GoCueDur
        -> PropertyMapping(DueTime) => #2
        #0, #2 -> Delay(DueTime=PT0.3S)
        -> WorkflowOutput
    -> SelectMany Response => #8
        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=1) => #2
        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=2) => #5
        #2, #5 -> Merge
        -> Take(Count=1)
        -> Sink ResetSpouts
            SubscribeSubject Beam1Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BooleanProperty(Value=true)
            -> MulticastSubject Beam1Bool

            SubscribeSubject Beam2Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BooleanProperty(Value=true)
            -> MulticastSubject Beam2Bool
        -> Sink RecordFirstLick
            WorkflowInput Source1
            -> MulticastSubject FirstLick
            -> WorkflowOutput
        -> Disable Sink Count_%_Right_Licks
            WorkflowInput Source1
            -> MulticastSubject FirstLick => #1
            -> Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=4))
                -> WorkflowOutput
            -> IntProperty(Value=0) => #3
            #1 -> Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=16))
                -> WorkflowOutput
            -> IntProperty(Value=1) => #5
            #3, #5 -> Merge
            -> Bonsai.Dsp.Buffer(Count=3, Skip=1)
            -> Bonsai.Dsp.Sum
            -> MemberSelector(Selector=Val0)
            -> Divide(Operand=DoubleProperty(Value=10))
            -> MulticastSubject %_Right_Licks
            -> WorkflowOutput
        -> Take(Count=1) => #11
        SubscribeSubject CorrectCount => #12
        SubscribeSubject Sa => #13
        SubscribeSubject Sb => #14
        #14, #13 -> Zip
        -> GreaterThan => #16
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1) => #18
        #16 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=2) => #20
        #18, #20 -> Merge
        -> Take(Count=1) => #22
        #22, #11 -> Zip
        -> Equal
        -> MulticastSubject Correct => #25
        -> Take(Count=1) => #26
        #25 -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1) => #28
        #28, #12 -> Zip
        -> Take(Count=1)
        -> Add => #31
        #25 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=0) => #33
        #33, #12 -> Zip
        -> Add => #35
        #31, #35 -> Merge
        -> MulticastSubject CorrectCount => #37
        #26, #37 -> Zip
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    -> BooleanProperty(Value=false)
    -> MulticastSubject AbortTrial => #10
    SubscribeSubject ResponseWindow
    -> PropertyMapping(DueTime) => #12
    #7, #12 -> Delay(DueTime=PT10S)
    -> BooleanProperty(Value=false)
    -> MulticastSubject Correct
    -> BooleanProperty(Value=true)
    -> MulticastSubject AbortTrial => #17
    #10, #17 -> Merge => #18
    -> Condition
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> SelectMany Feedback => #20
        SubscribeSubject Correct => #0
        -> Condition Yes
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany Success
            SubscribeSubject FirstLick => #0
            -> Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            -> SelectMany RewardRight => #2
                WorkflowInput Source1
                -> Disable SelectMany RewardTone(Description=SoundCard)
                    SubscribeSubject RewardDur
                    -> PropertyMapping(DueTime) => #1
                    WorkflowInput Source1 => #2
                    ExternalizedMapping(SoundLevel) => #3
                    Source2=#2, Source2=#3 -> Sink SetLevel => #4
                        ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                        WorkflowInput Source1 => #1
                        #1, #0 -> IntProperty(Value=80)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=360)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    SubscribeSubject RewardID
                    -> PropertyMapping(Value) => #6
                    #4, #6 -> IntProperty(Value=5)
                    -> Take(Count=1)
                    -> MulticastSubject SoundIndex
                    -> Timestamp
                    -> MemberSelector(Selector=Timestamp.TimeOfDay)
                    -> MulticastSubject RewardToneTime => #12
                    #12, #1 -> Delay(DueTime=PT0.8S)
                    -> WorkflowOutput
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve)
                -> MulticastSubject BehModule => #3
                SubscribeSubject RightValveTime
                -> PropertyMapping(DueTime) => #5
                #3, #5 -> Delay(DueTime=PT0.046S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve)
                -> MulticastSubject BehModule
                -> IntProperty(Value=1)
                -> MulticastSubject "RewSide "
                -> WorkflowOutput
            #0 -> Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> SelectMany RewardLeft => #4
                WorkflowInput Source1
                -> Disable SelectMany RewardTone(Description=SoundCard)
                    SubscribeSubject RewardDur
                    -> PropertyMapping(DueTime) => #1
                    WorkflowInput Source1 => #2
                    ExternalizedMapping(SoundLevel) => #3
                    Source2=#2, Source2=#3 -> Sink SetLevel => #4
                        ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                        WorkflowInput Source1 => #1
                        #1, #0 -> IntProperty(Value=80)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=360)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    SubscribeSubject RewardID
                    -> PropertyMapping(Value) => #6
                    #4, #6 -> IntProperty(Value=5)
                    -> Take(Count=1)
                    -> MulticastSubject SoundIndex
                    -> Timestamp
                    -> MemberSelector(Selector=Timestamp.TimeOfDay)
                    -> MulticastSubject RewardToneTime => #12
                    #12, #1 -> Delay(DueTime=PT0.8S)
                    -> WorkflowOutput
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke1Valve)
                -> MulticastSubject BehModule => #3
                SubscribeSubject LeftValveTime
                -> PropertyMapping(DueTime) => #5
                #3, #5 -> Delay(DueTime=PT0.047S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve)
                -> MulticastSubject BehModule
                -> IntProperty(Value=0)
                -> MulticastSubject "RewSide "
                -> WorkflowOutput
            #4, #2 -> Merge
            -> WorkflowOutput
        -> IntProperty(Value=1) => #3
        #0 -> Condition No
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany Failure
            WorkflowInput Source1
            -> Disable IntProperty(Value=1)
            -> Disable MulticastSubject Attempts
            -> SelectMany Timeout
                WorkflowInput Source1 => #0
                SubscribeSubject TimeoutDuration
                -> PropertyMapping(DueTime) => #2
                #0, #2 -> Delay(DueTime=PT3S)
                -> WorkflowOutput
            -> WorkflowOutput
        -> IntProperty(Value=0) => #6
        #3, #6 -> Merge
        -> MulticastSubject TrialOutcome => #8
        -> Take(Count=1) => #9
        #8 -> Disable IntProperty(Value=1) => #10
        Disable SubscribeSubject RewardCount => #11
        #10, #11 -> Disable Zip
        -> Disable Take(Count=1)
        -> Disable Add
        -> Disable MulticastSubject RewardCount => #15
        #9, #15 -> Zip
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    #18 -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> IntProperty(Value=-1)
    -> MulticastSubject TrialOutcome => #23
    #20, #23 -> Merge
    -> Sink IncrementTrial
        SubscribeSubject TrialNumber => #0
        IntProperty(Value=1) => #1
        #0, #1 -> Zip
        -> Add
        -> MulticastSubject TrialNumber
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput
    #7, #8 -> GroupWorkflow Record_Latency
        SubscribeSubject TrialEnd
        -> Condition => #1
            WorkflowInput Source1
            -> WorkflowOutput
        WorkflowInput Source1
        -> SelectMany Start_Timer => #3
            Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.001S)
            -> MulticastSubject Time
            -> WorkflowOutput
        WorkflowInput Source2 => #4
        #1, #4 -> Merge => #5
        #3, #5 -> TakeUntil
        -> TakeLast(Count=1)
        -> MulticastSubject "Response_Latency (ms)"
        -> WorkflowOutput
-> SelectMany Trial
    WorkflowInput Source1
    -> SelectMany Response
        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=0) => #2
        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=1) => #5
        #2, #5 -> Merge
        -> Take(Count=1)
        -> MulticastSubject FirstLick
        -> Sink ResetSpouts
            SubscribeSubject Beam1Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BooleanProperty(Value=true)
            -> MulticastSubject Beam1Bool

            SubscribeSubject Beam2Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BooleanProperty(Value=true)
            -> MulticastSubject Beam2Bool
        -> Disable Sink RecordFirstLick
            WorkflowInput Source1
            -> MulticastSubject FirstLick
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany ReleaseReward
        SubscribeSubject FirstLick => #0
        -> Condition Left
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> SelectMany "Sa < Sb"
            SubscribeSubject Amp1 => #0
            -> Condition "Amp1 > Amp2"
                WorkflowInput Source1 => #0
                SubscribeSubject Amp2
                -> PropertyMapping(Value) => #2
                #0, #2 -> GreaterThan(Operand=IntProperty(Value=84))
                -> WorkflowOutput
            -> SelectMany "Sa = Amp2" => #2
                SubscribeSubject Amp2
                -> MulticastSubject Sa => #1
                SubscribeSubject Amp1
                -> MulticastSubject Sb => #3
                #1, #3 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #0 -> Condition "Amp1 < Amp2"
                WorkflowInput Source1 => #0
                SubscribeSubject Amp2
                -> PropertyMapping(Value) => #2
                #0, #2 -> LessThan(Operand=IntProperty(Value=84))
                -> WorkflowOutput
            -> SelectMany "Sa = Amp1" => #4
                SubscribeSubject Amp1
                -> MulticastSubject Sa => #1
                SubscribeSubject Amp2
                -> MulticastSubject Sb => #3
                #1, #3 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #2, #4 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany Sa
            WorkflowInput Source1 => #0
            SubscribeSubject Sa
            -> PropertyMapping(SoundLevel) => #2
            #0, #2 -> Sink SetLevel => #3
                ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                WorkflowInput Source1 => #1
                #1, #0 -> IntProperty(Value=76)
                -> Bonsai.Scripting.ExpressionTransform
                  Expression: (it-107.54)/-0.0764
                -> PropertyMapping(Value)
                -> IntProperty(Value=412)
                -> Sink Left
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> Sink Right
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> WorkflowOutput
            SubscribeSubject StimID
            -> PropertyMapping(Value) => #5
            #3, #5 -> IntProperty(Value=3)
            -> MulticastSubject SoundIndex => #7
            SubscribeSubject WNDur
            -> PropertyMapping(DueTime) => #9
            #7, #9 -> Delay(DueTime=PT0.4S)
            -> IntProperty(Value=30)
            -> MulticastSubject SoundIndex
            -> WorkflowOutput
        -> SelectMany DelayPeriod
            Disable SubscribeSubject DelayDistribution
            -> Disable Bonsai.Numerics.Distributions.Sample
            -> Disable Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> Disable MulticastSubject DelayPeriod

            WorkflowInput Source1 => #4
            SubscribeSubject DelayPeriod
            -> PropertyMapping(DueTime) => #6
            #4, #6 -> Delay(DueTime=PT0.4S)
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany Sb
            WorkflowInput Source1 => #0
            SubscribeSubject Sb
            -> PropertyMapping(SoundLevel) => #2
            #0, #2 -> Sink SetLevel => #3
                ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                WorkflowInput Source1 => #1
                #1, #0 -> IntProperty(Value=84)
                -> Bonsai.Scripting.ExpressionTransform
                  Expression: (it-107.54)/-0.0764
                -> PropertyMapping(Value)
                -> IntProperty(Value=308)
                -> Sink Left
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> Sink Right
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> WorkflowOutput
            SubscribeSubject StimID
            -> PropertyMapping(Value) => #5
            #3, #5 -> IntProperty(Value=3)
            -> MulticastSubject SoundIndex => #7
            SubscribeSubject WNDur
            -> PropertyMapping(DueTime) => #9
            #7, #9 -> Delay(DueTime=PT0.4S)
            -> IntProperty(Value=30)
            -> MulticastSubject SoundIndex
            -> Delay(DueTime=PT0.5S)
            -> WorkflowOutput
        -> SelectMany '"Go"Cue'
            WorkflowInput Source1 => #0
            SubscribeSubject GoCueDur
            -> PropertyMapping(DueTime) => #2
            #0, #2 -> Delay(DueTime=PT0.3S)
            -> WorkflowOutput
        -> Disable Condition "Sa < Sb"
            SubscribeSubject Sa => #0
            SubscribeSubject Sb
            -> PropertyMapping(Value) => #2
            #0, #2 -> LessThan(Operand=IntProperty(Value=84))
            -> WorkflowOutput
        -> SelectMany RewardLeft
            WorkflowInput Source1
            -> Disable SelectMany RewardTone(Description=SoundCard)
                SubscribeSubject RewardDur
                -> PropertyMapping(DueTime) => #1
                WorkflowInput Source1 => #2
                ExternalizedMapping(SoundLevel) => #3
                Source2=#2, Source2=#3 -> Sink SetLevel => #4
                    ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                    WorkflowInput Source1 => #1
                    #1, #0 -> IntProperty(Value=80)
                    -> Bonsai.Scripting.ExpressionTransform
                      Expression: (it-107.54)/-0.0764
                    -> PropertyMapping(Value)
                    -> IntProperty(Value=360)
                    -> Sink Left
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> Sink Right
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> WorkflowOutput
                SubscribeSubject RewardID
                -> PropertyMapping(Value) => #6
                #4, #6 -> IntProperty(Value=5)
                -> Take(Count=1)
                -> MulticastSubject SoundIndex
                -> Timestamp
                -> MemberSelector(Selector=Timestamp.TimeOfDay)
                -> MulticastSubject RewardToneTime => #12
                #12, #1 -> Delay(DueTime=PT0.8S)
                -> WorkflowOutput
            -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke1Valve)
            -> MulticastSubject BehModule => #3
            SubscribeSubject LeftValveTime
            -> PropertyMapping(DueTime) => #5
            #3, #5 -> Delay(DueTime=PT0.048S)
            -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve)
            -> MulticastSubject BehModule
            -> WorkflowOutput
        -> IntProperty(Value=0) => #9
        #0 -> Condition Right
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> SelectMany "Sa > Sb"
            SubscribeSubject Amp1 => #0
            -> Condition "Amp1 > Amp2"
                WorkflowInput Source1 => #0
                SubscribeSubject Amp2
                -> PropertyMapping(Value) => #2
                #0, #2 -> GreaterThan(Operand=IntProperty(Value=68))
                -> WorkflowOutput
            -> SelectMany "Sa = Amp1" => #2
                SubscribeSubject Amp1
                -> MulticastSubject Sa => #1
                SubscribeSubject Amp2
                -> MulticastSubject Sb => #3
                #1, #3 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #0 -> Condition "Amp1 < Amp2"
                WorkflowInput Source1 => #0
                SubscribeSubject Amp2
                -> PropertyMapping(Value) => #2
                #0, #2 -> LessThan(Operand=IntProperty(Value=68))
                -> WorkflowOutput
            -> SelectMany "Sa = Amp2" => #4
                SubscribeSubject Amp2
                -> MulticastSubject Sa => #1
                SubscribeSubject Amp1
                -> MulticastSubject Sb => #3
                #1, #3 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #2, #4 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany Sa
            WorkflowInput Source1 => #0
            SubscribeSubject Sa
            -> PropertyMapping(SoundLevel) => #2
            #0, #2 -> Sink SetLevel => #3
                ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                WorkflowInput Source1 => #1
                #1, #0 -> IntProperty(Value=76)
                -> Bonsai.Scripting.ExpressionTransform
                  Expression: (it-107.54)/-0.0764
                -> PropertyMapping(Value)
                -> IntProperty(Value=412)
                -> Sink Left
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> Sink Right
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> WorkflowOutput
            SubscribeSubject StimID
            -> PropertyMapping(Value) => #5
            #3, #5 -> IntProperty(Value=3)
            -> MulticastSubject SoundIndex => #7
            SubscribeSubject WNDur
            -> PropertyMapping(DueTime) => #9
            #7, #9 -> Delay(DueTime=PT0.4S)
            -> IntProperty(Value=30)
            -> MulticastSubject SoundIndex
            -> WorkflowOutput
        -> SelectMany DelayPeriod
            Disable SubscribeSubject DelayDistribution
            -> Disable Bonsai.Numerics.Distributions.Sample
            -> Disable Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> Disable MulticastSubject DelayPeriod

            WorkflowInput Source1 => #4
            SubscribeSubject DelayPeriod
            -> PropertyMapping(DueTime) => #6
            #4, #6 -> Delay(DueTime=PT0.4S)
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany Sb
            WorkflowInput Source1 => #0
            SubscribeSubject Sb
            -> PropertyMapping(SoundLevel) => #2
            #0, #2 -> Sink SetLevel => #3
                ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                WorkflowInput Source1 => #1
                #1, #0 -> IntProperty(Value=84)
                -> Bonsai.Scripting.ExpressionTransform
                  Expression: (it-107.54)/-0.0764
                -> PropertyMapping(Value)
                -> IntProperty(Value=308)
                -> Sink Left
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> Sink Right
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> WorkflowOutput
            SubscribeSubject StimID
            -> PropertyMapping(Value) => #5
            #3, #5 -> IntProperty(Value=3)
            -> MulticastSubject SoundIndex => #7
            SubscribeSubject WNDur
            -> PropertyMapping(DueTime) => #9
            #7, #9 -> Delay(DueTime=PT0.4S)
            -> IntProperty(Value=30)
            -> MulticastSubject SoundIndex
            -> Delay(DueTime=PT0.5S)
            -> WorkflowOutput
        -> SelectMany '"Go"Cue'
            WorkflowInput Source1 => #0
            SubscribeSubject GoCueDur
            -> PropertyMapping(DueTime) => #2
            #0, #2 -> Delay(DueTime=PT0.3S)
            -> WorkflowOutput
        -> Disable Condition "Sa > Sb"
            SubscribeSubject Sa => #0
            SubscribeSubject Sb
            -> PropertyMapping(Value) => #2
            #0, #2 -> GreaterThan(Operand=IntProperty(Value=84))
            -> WorkflowOutput
        -> SelectMany RewardRight
            WorkflowInput Source1
            -> Disable SelectMany RewardTone(Description=SoundCard)
                SubscribeSubject RewardDur
                -> PropertyMapping(DueTime) => #1
                WorkflowInput Source1 => #2
                ExternalizedMapping(SoundLevel) => #3
                Source2=#2, Source2=#3 -> Sink SetLevel => #4
                    ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                    WorkflowInput Source1 => #1
                    #1, #0 -> IntProperty(Value=80)
                    -> Bonsai.Scripting.ExpressionTransform
                      Expression: (it-107.54)/-0.0764
                    -> PropertyMapping(Value)
                    -> IntProperty(Value=360)
                    -> Sink Left
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> Sink Right
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> WorkflowOutput
                SubscribeSubject RewardID
                -> PropertyMapping(Value) => #6
                #4, #6 -> IntProperty(Value=5)
                -> Take(Count=1)
                -> MulticastSubject SoundIndex
                -> Timestamp
                -> MemberSelector(Selector=Timestamp.TimeOfDay)
                -> MulticastSubject RewardToneTime => #12
                #12, #1 -> Delay(DueTime=PT0.8S)
                -> WorkflowOutput
            -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve)
            -> MulticastSubject BehModule => #3
            SubscribeSubject RightValveTime
            -> PropertyMapping(DueTime) => #5
            #3, #5 -> Delay(DueTime=PT0.049S)
            -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve)
            -> MulticastSubject BehModule
            -> WorkflowOutput
        -> IntProperty(Value=1) => #18
        #9, #18 -> Merge
        -> MulticastSubject "RewSide "
        -> WorkflowOutput
    -> Sink IncrementTrial
        SubscribeSubject TrialNumber => #0
        IntProperty(Value=1) => #1
        #0, #1 -> Zip
        -> Add
        -> MulticastSubject TrialNumber
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput
-> Sink EndTrial
    WorkflowInput Source1
    -> BooleanProperty(Value=true)
    -> MulticastSubject TrialEnd
    -> WorkflowOutput
-> Repeat => #15
#15, #7 -> TakeUntil
-> WorkflowOutput

ExternalizedMapping(Data_Path, Exp_Name, Animal_ID)
-> GroupWorkflow Control_Parameters
    ExternalizedMapping(Value(DisplayName=Data_Path))
    -> StringProperty(Value=../../Data) => #1
    ExternalizedMapping(Value(DisplayName=Exp_Name))
    -> StringProperty(Value=PWM_Lick_To_Release) => #3
    ExternalizedMapping(Value(DisplayName=Animal_ID))
    -> StringProperty(Value=TEST)
    -> BehaviorSubject Animal_ID => #6
    IntProperty(Value=0)
    -> Timestamp => #8
    -> MemberSelector(Selector=Timestamp.DateTime.Year) => #9
    #8 -> MemberSelector(Selector=Timestamp.DateTime.Month) => #10
    #8 -> MemberSelector(Selector=Timestamp.Date.Day) => #11
    #9, #10, #11 -> Zip
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1.toString() + "_" + Item2.toString() + "_" + Item3.toString() as date
        )
    -> MemberSelector(Selector=date) => #14
    #1, #3, #6, #14 -> Zip => #15
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Trial_Summary.csv" as Trial_Summary_File_Name
        )
    -> MemberSelector(Selector=Trial_Summary_File_Name)
    -> BehaviorSubject Trial_File_Name
    #15 -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Detected_Licks.csv" as Licks_File_Name
        )
    -> MemberSelector(Selector=Licks_File_Name)
    -> BehaviorSubject Licks_File_Name
    #15 -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Video_data.avi" as Video_File_Name
        )
    -> MemberSelector(Selector=Video_File_Name)
    -> BehaviorSubject Video_File_Name
    #15 -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Video_timestamps.txt" as Video_Timestamps_File_Name
        )
    -> MemberSelector(Selector=Video_Timestamps_File_Name)
    -> BehaviorSubject Video_Timestamps_File_Name

GroupWorkflow Save_Data
    SubscribeSubject FirstLick => #0
    SubscribeSubject TrialEnd
    -> Condition => #2
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject Animal_ID => #3
    SubscribeSubject "RewSide " => #4
    SubscribeSubject ITI => #5
    SubscribeSubject TrialNumber => #6
    SubscribeSubject GoCueDur => #7
    SubscribeSubject Trial_File_Name
    -> PropertyMapping(FileName) => #9
    SubscribeSubject WNDur => #10
    #3, #6, #0, #4, #10, #7, #5 -> CombineLatest => #11
    SubscribeSubject DelayPeriod => #12
    SubscribeSubject Sa => #13
    SubscribeSubject Sb => #14
    #13, #14, #12 -> CombineLatest => #15
    #11, #15 -> CombineLatest => #16
    #16, #2 -> Sample
    -> Timestamp => #18
    -> MemberSelector(Selector=Value) => #19
    #18 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #20
    #19, #20 -> Zip
    -> Bonsai.Scripting.ExpressionTransform => #22
      Expression:
        new(
        Item1.Item1.Item1 as Animal_ID,
        Item1.Item1.Item2 as TrialNumber,
        Item1.Item1.Item3 as FirstLick,
        Item1.Item1.Item4 as Rewside,
        Item1.Item1.Item5 as WNDur,
        Item1.Item1.Item6 as GoCueDur,
        Item1.Item1.Item7 as ITI,

        Item1.Item2.Item1 as Stim1Amp,
        Item1.Item2.Item2 as Stim2Amp,
        Item1.Item2.Item3 as DelayPeriod,

        Item2 as Time
        )
    #22, #9 -> Bonsai.IO.CsvWriter(FileName=../../Data/TEST/PWM_Lick_To_Release_TEST_2022_9_5/Trial_Summary.csv, Append=true, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    -> WorkflowOutput

    SubscribeSubject Beam1Bool => #25
    -> Timestamp => #26
    -> MemberSelector(Selector=Value) => #27
    #26 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #28
    #25 -> StringProperty(Value=Beam1Bool) => #29
    #27, #28, #29 -> Zip => #30
    SubscribeSubject Beam2Bool => #31
    -> Timestamp => #32
    -> MemberSelector(Selector=Value) => #33
    #32 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #34
    #31 -> StringProperty(Value=Beam2Bool) => #35
    #33, #34, #35 -> Zip => #36
    #30, #36 -> Merge
    -> Bonsai.Scripting.ExpressionTransform => #38
      Expression:
        new(
        Item1 as State,
        Item2 as Time,
        Item3 as Spout
        )
    SubscribeSubject Licks_File_Name
    -> PropertyMapping(FileName) => #40
    #38, #40 -> Bonsai.IO.CsvWriter
      FileName=../../Data/TEST/PWM_Lick_To_Release_TEST_2022_9_5/Detected_Licks.csv
      Delimiter=","
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true

Disable GroupWorkflow Stats
  Description:
    Light Blue = Percent_Correct
    Red = Percent_Right_Licks
    Orange = Percent_Abort_Trial
    Dark Blue = Normalised Response Latency
  Workflow
    GroupWorkflow Percent_Correct => #0
        SubscribeSubject CorrectCount => #0
        SubscribeSubject Visualizer_Window_Size => #1
        -> PropertyMapping(Value) => #2
        #1 -> PropertyMapping(Count) => #3
        #0, #3 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #6
        #6, #2 -> Divide(Operand=DoubleProperty(Value=20)) => #7
        #1 -> PropertyMapping(Count) => #8
        IntProperty(Value=0) => #9
        SubscribeSubject AbortTrial
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=1)
        -> Skip(Count=1) => #13
        #13, #9 -> Merge
        -> Accumulate => #15
        #15, #8 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #18
        #1 -> PropertyMapping(Value) => #19
        #18, #19 -> Divide(Operand=DoubleProperty(Value=20)) => #20
        #7, #20 -> Zip => #21
        -> MemberSelector(Selector=Item1) => #22
        #21 -> MemberSelector(Selector=Item2)
        -> PropertyMapping(Value) => #24
        #22, #24 -> Divide(Operand=DoubleProperty(Value=458.5))
        -> WorkflowOutput
    GroupWorkflow Percent_Abort => #1
        SubscribeSubject Visualizer_Window_Size => #0
        -> PropertyMapping(Value) => #1
        #0 -> PropertyMapping(Count) => #2
        IntProperty(Value=0) => #3
        IntProperty(Value=0) => #4
        SubscribeSubject AbortTrial => #5
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1) => #7
        #5 -> IntProperty(Value=1)
        -> Skip(Count=1) => #9
        #9, #3 -> Merge
        -> Accumulate => #11
        #5 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=0) => #13
        #7, #13 -> Merge
        -> Skip(Count=1) => #15
        #15, #4 -> Merge
        -> Accumulate => #17
        #17, #2 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #20
        #20, #1 -> Divide(Operand=DoubleProperty(Value=20)) => #21
        #0 -> PropertyMapping(Count) => #22
        #11, #22 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #25
        #0 -> PropertyMapping(Value) => #26
        #25, #26 -> Divide(Operand=DoubleProperty(Value=20)) => #27
        #21, #27 -> Zip => #28
        -> MemberSelector(Selector=Item1) => #29
        #28 -> MemberSelector(Selector=Item2)
        -> PropertyMapping(Value) => #31
        #29, #31 -> Divide(Operand=DoubleProperty(Value=505.5))
        -> WorkflowOutput
    GroupWorkflow Count_%_Right_Licks(Description="Calculate rolling average oif correct trials over window of desired size-") => #2
        SubscribeSubject FirstLick => #0
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> IntProperty(Value=0) => #2
        #0 -> Condition
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> IntProperty(Value=1) => #4
        #2, #4 -> Merge => #5
        SubscribeSubject Anti_Bias_Window => #6
        -> PropertyMapping(Value) => #7
        #6 -> PropertyMapping(Count) => #8
        #5, #8 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #11
        #11, #7 -> Divide(Operand=DoubleProperty(Value=20))
        -> MulticastSubject %_Right_Licks
        -> WorkflowOutput
    GroupWorkflow Average_Normalised_Latency => #3
        SubscribeSubject Visualizer_Window_Size => #0
        -> PropertyMapping(Value) => #1
        #0 -> PropertyMapping(Count) => #2
        SubscribeSubject "Response_Latency (ms)" => #3
        #3, #2 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #6
        #6, #1 -> Divide(Operand=DoubleProperty(Value=20)) => #7
        SubscribeSubject ResponseWindow
        -> MemberSelector(Selector=TotalSeconds)
        -> Multiply(Operand=DoubleProperty(Value=1000))
        -> PropertyMapping(Value) => #11
        #7, #11 -> Divide(Operand=DoubleProperty(Value=10000))
        -> WorkflowOutput
    DoubleProperty(Value=0.5) => #4
    #0, #4 -> Merge => #5
    #1, #4 -> Merge => #6
    #3, #4 -> Merge => #7
    FloatProperty(Value=0.5) => #8
    #2, #8 -> Merge => #9
    #5, #6, #9, #7 -> CombineLatest
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1 as Percent_Correct,
        Item2 as Percent_Abort,
        Item3 as Percent_Right_Licks,
        Item4 as Avg_Norm_Latency
        )
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(ValueSelector="Percent_Correct,Percent_Abort,Percent_Right_Licks,Avg_Norm_Latency", Capacity=nil)
    -> WorkflowOutput
