WorkflowBuilder(Version=2.6.3)
Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")

GroupWorkflow HarpSoundCard
    SubscribeSubject PlaySound
    -> Skip(Count=1) => #1
    SubscribeSubject Soundcard?
    -> Condition => #3
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=true))
        -> WorkflowOutput
    SubscribeSubject SoundIndex
    -> Skip(Count=1)
    -> Timestamp
    -> MemberSelector(Selector=Timestamp) => #7
    Disable SubscribeSubject Volume
    -> Disable Skip(Count=1)
    -> Disable Bonsai.Scripting.ExpressionTransform => #10
      Expression: uint16(it)
    SubscribeSubject Freq
    -> Skip(Count=1)
    -> Bonsai.Scripting.PythonTransform
      Script:
        @returns(float)
        def process(value):
          return 2**value
    -> Bonsai.Scripting.ExpressionTransform
      Expression: uint16(it)
    -> Bonsai.Harp.Format(MessageType=Write, Address=32, PayloadType=U16) => #15
    Disable SubscribeSubject PlayTone
    -> Disable Skip(Count=1)
    -> Disable IntProperty(Value=32)
    -> Disable Bonsai.Scripting.ExpressionTransform => #19
      Expression: uint16(it)
    #19, #10 -> Disable CombineLatest
    -> Disable SelectMany ToArray
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1) => #1
        #0 -> MemberSelector(Selector=Item2) => #2
        #1, #2 -> Merge
        -> ToArray
        -> WorkflowOutput
    -> Disable IntProperty(Value=1)
    -> Disable Bonsai.Harp.Format(MessageType=Write, Address=36, PayloadType=U16) => #23
    SubscribeSubject StopSound
    -> IntProperty(Value=3)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: byte(it)
    -> Bonsai.Harp.Format(MessageType=Write, Address=33, PayloadType=U8) => #27
    SubscribeSubject Volume
    -> Skip(Count=1)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: uint16(it)
    -> Sink
        WorkflowInput Source1
        -> Bonsai.Harp.Format(MessageType=Write, Address=34, PayloadType=U8)
        -> WorkflowOutput
    -> Bonsai.Harp.Format(MessageType=Write, Address=35, PayloadType=U8) => #32
    #23, #15, #27, #32 -> Merge => #33
    #1, #33 -> Merge => #34
    -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM3) => #35
    #35, #3 -> SubscribeWhen
    #34 -> Timestamp
    -> MemberSelector(Selector=Timestamp) => #38
    #38, #7 -> Zip
    -> Subtract

    IntProperty(Value=0)
    -> BehaviorSubject SoundIndex

    SubscribeSubject SoundIndex
    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U16, Payload=0)
    -> BehaviorSubject PlaySound

    ExternalizedMapping(Value(DisplayName=Soundcard?))
    -> BooleanProperty(Value=true)
    -> BehaviorSubject Soundcard?

    FloatProperty(Value=11.5)
    -> BehaviorSubject Freq

    IntProperty(Value=1000)
    -> BehaviorSubject Volume

    SubscribeSubject Freq
    -> BehaviorSubject PlayTone

    Disable Bonsai.Windows.Input.KeyDown(Filter=End, SuppressRepetitions=false)
    -> IntProperty(Value=3)
    -> BehaviorSubject StopSound

    FloatProperty(Value=11.96578)
    -> BehaviorSubject 4kHz

    FloatProperty(Value=13.96578)
    -> BehaviorSubject 16kHz

GroupWorkflow HarpBeh
  Description:
    Workflows to connect and interact with Harp Behaviour Module

    Will initialise device and create subjects:

    BehModuleInput -- Messagebytes -- output from devicecommand node to issue outputs to harp board

    BehBytes -- bytesarray -- messagebytes output to be written to .bin file with MatrixWriter node

    BeamXbool -- bool -- readout  for hi/lo state of photogate/lickspout connected to ethernet breakout ports
  Workflow
    Disable BooleanProperty(Value=false)
    -> Disable BehaviorSubject Beam0Bool
    -> Disable BehaviorSubject Beam1Bool
    -> Disable BehaviorSubject Beam2Bool

    BooleanProperty(Value=false)
    -> Bonsai.Harp.Format(MessageType=Write, Address=32, PayloadType=U8)
    -> BehaviorSubject BehModule

    ByteProperty(Value=0)
    -> ToArray
    -> BehaviorSubject BehBytes

    SubscribeSubject BehModule
    -> Skip(Count=1)
    -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM4) => #12
    Disable SubscribeSubject Emulate
    -> Disable Equal(Operand=BooleanProperty(Value=false))
    -> Disable Condition => #15
        WorkflowInput Source1
        -> WorkflowOutput
    #12, #15 -> Disable SubscribeWhen => #16
    -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke0InfraRedBeam)
    -> BehaviorSubject Beam0Bool
    #16 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke1InfraRedBeam)
    -> BehaviorSubject Beam1Bool
    #16 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke2InfraRedBeam)
    -> BehaviorSubject Beam2Bool
    #16 -> MemberSelector(Selector=MessageBytes)
    -> MulticastSubject BehBytes

    SubscribeSubject BehBytes
    -> Bonsai.Dsp.MatrixWriter(Path=C:\bonsai\bonsaiprotocols\base4harp\Beh_Hit_Data.bin, Suffix=FileCount, Overwrite=false, Layout=ColumnMajor)

    Disable GroupWorkflow Emulate(Description="Runs when emulate is True")
        Bonsai.Windows.Input.KeyDown(Filter=Down, SuppressRepetitions=false)
        -> BooleanProperty(Value=true) => #1
        Bonsai.Windows.Input.KeyUp(Filter=Down)
        -> BooleanProperty(Value=false) => #3
        #1, #3 -> Merge => #4
        SubscribeSubject Emulate
        -> Condition => #6
            WorkflowInput Source1
            -> WorkflowOutput
        #4, #6 -> SubscribeWhen
        -> MulticastSubject Beam0Bool

        Bonsai.Windows.Input.KeyDown(Filter=Up, SuppressRepetitions=false)
        -> BooleanProperty(Value=true) => #10
        Bonsai.Windows.Input.KeyUp(Filter=Up)
        -> BooleanProperty(Value=false) => #12
        #10, #12 -> Merge => #13
        SubscribeSubject Emulate
        -> Condition => #15
            WorkflowInput Source1
            -> WorkflowOutput
        #13, #15 -> SubscribeWhen
        -> MulticastSubject Beam1Bool

        Bonsai.Windows.Input.KeyDown(Filter=D2, SuppressRepetitions=false)
        -> BooleanProperty(Value=true) => #19
        Bonsai.Windows.Input.KeyUp(Filter=D2)
        -> BooleanProperty(Value=false) => #21
        #19, #21 -> Merge => #22
        SubscribeSubject Emulate
        -> Condition => #24
            WorkflowInput Source1
            -> WorkflowOutput
        #22, #24 -> SubscribeWhen
        -> MulticastSubject Beam2Bool

        Disable Bonsai.Windows.Input.KeyDown(Filter=None, SuppressRepetitions=false)
        -> Disable Bonsai.Audio.PlaySource(DeviceName="Generic Software on Speakers (Realtek High Definition Audio(SST))")

        Bonsai.Audio.CreateAudioContext(SampleRate=0, Refresh=0, Position(X=0, Y=0, Z=0), Velocity(X=0, Y=0, Z=0), Direction(X=-0, Y=-0, Z=-1), Up(X=0, Y=1, Z=0), Gain=1)
        -> Bonsai.Audio.AudioResources
          Buffers
            BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=i03_WhiteNoise, FileName=C:\bonsai\bonsaiprotocols\Sound\toSoundCard\03_WhiteNoise.wav)
            BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=i05_RewardTone_32bit_stereo_nohead, FileName=C:\Users\Dammy\Documents\HarpSoundCard\Interface\toSoundCard\i05_RewardTone_32bit_stereo_nohead.bin)
            BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=i05_GoCue, FileName=C:\Users\Dammy\Documents\HarpSoundCard\Interface\toSoundCard\i05_GoCue.bin)
            BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=i07_ViolationTone, FileName=C:\Users\Dammy\Documents\HarpSoundCard\Interface\toSoundCard\i07_ViolationTone.bin)
            BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=i08_TimeoutTone, FileName=C:\Users\Dammy\Documents\HarpSoundCard\Interface\toSoundCard\i08_TimeoutTone.bin)
            BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=i30_stop, FileName=C:\Users\Dammy\Documents\HarpSoundCard\Interface\toSoundCard\i30_stop.bin)
          Sources
            SourceConfiguration
              Name=WhiteNoise
              BufferName=i02_WhiteNoise
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Initial
            SourceConfiguration
              Name=RewardTone
              BufferName=i05_RewardTone_32bit_stereo_nohead
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Initial
            SourceConfiguration
              Name=GoCue
              BufferName=i05_GoCue
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Initial
            SourceConfiguration
              Name=ViolTone
              BufferName=i07_ViolationTone
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Initial
            SourceConfiguration
              Name=TimeoutTone
              BufferName=i08_TimeoutTone
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Initial
            SourceConfiguration
              Name=Stop
              BufferName=i30_stop
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Initial
        -> Bonsai.Resources.LoadResources

        SubscribeSubject SoundIndex => #32
        SubscribeSubject Soundcard?
        -> Condition => #34
            WorkflowInput Source1
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        #32, #34 -> SubscribeWhen => #35
        -> Condition 2
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=WhiteNoise))
        #35 -> Condition 2
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=WhiteNoise))
        #35 -> Condition 2
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=WhiteNoise))

        BooleanProperty(Value=false)
        -> BehaviorSubject Emulate

ExternalizedMapping
  "RightValveTime (ms)"
  "LeftValveTime (ms)"
  "ResponseWindow (s)"(DisplayName="ResponseWindow (s)")
  "ITI (s)"
  Anti_Bias_Window
  Visualizer_Window_Size
  "TimeoutDuration (s)"
  WN_Dur(DisplayName="WN_Dur (ms)")
  "DelayPeriod (ms)"
  MaxWNDur
  MaxStartAmp
  "MaxDelayPeriod (ms)"
  StartAmp
-> GroupWorkflow DynamicVariables
    ExternalizedMapping(Value(DisplayName="RightValveTime (ms)"))
    -> FloatProperty(Value=50)
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject RightValveTime

    ExternalizedMapping(Value(DisplayName="LeftValveTime (ms)"))
    -> FloatProperty(Value=50)
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject LeftValveTime

    ExternalizedMapping(Value(DisplayName="ResponseWindow (s)"))
    -> FloatProperty(Value=10)
    -> Bonsai.Scripting.ExpressionTransform TimeFromSeconds
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject ResponseWindow

    ExternalizedMapping(Value(DisplayName="ITI (s)"))
    -> FloatProperty(Value=2)
    -> Bonsai.Scripting.ExpressionTransform TimeFromSeconds
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject ITI

    ExternalizedMapping(Value(DisplayName=Anti_Bias_Window))
    -> IntProperty(Value=20)
    -> BehaviorSubject Anti_Bias_Window

    ExternalizedMapping(Value(DisplayName=Visualizer_Window_Size))
    -> IntProperty(Value=20)
    -> BehaviorSubject Visualizer_Window_Size

    ExternalizedMapping(Value(DisplayName="TimeoutDuration (s)"))
    -> FloatProperty(Value=5)
    -> Bonsai.Scripting.ExpressionTransform TimeFromSeconds
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject TimeoutDuration

    ExternalizedMapping(Value(DisplayName=WN_Dur))
    -> FloatProperty(Value=10)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: TimeSpan.FromMilliseconds(it)
    -> Disable BehaviorSubject Stim1Dur
    -> Disable BehaviorSubject Stim2Dur
    -> BehaviorSubject WNDur

    ExternalizedMapping(Value(DisplayName="DelayPeriod (ms)"))
    -> FloatProperty(Value=700)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject DelayPeriod

    ExternalizedMapping(Value(DisplayName="MaxDelayPeriod (ms)"))
    -> FloatProperty(Value=3000)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject MaxDelayPeriod

    ExternalizedMapping(Value(DisplayName=MaxWNDur))
    -> FloatProperty(Value=400)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject MaxWNDur

    ExternalizedMapping(Value(DisplayName=MaxStartAmp))
    -> IntProperty(Value=60)
    -> BehaviorSubject MaxStartAmp

    ExternalizedMapping(Value(DisplayName=StartAmp))
    -> IntProperty(Value=40)
    -> BehaviorSubject StartAmp

GroupWorkflow StaticVariables
    FloatProperty(Value=1)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject WaitForResponse

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=1, Upper=3)
    -> BehaviorSubject DelayDistribution

    BooleanProperty(Value=false)
    -> BehaviorSubject Correct

    Bonsai.Shaders.RenderFrame
    -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
    -> PublishSubject DrawQuad

    IntProperty(Value=0)
    -> PublishSubject TrialOutcome

    IntProperty(Value=0)
    -> BehaviorSubject FirstLick

    IntProperty(Value=0)
    -> BehaviorSubject SecondLick

    Bonsai.Shaders.Input.KeyDown(Key=End, Modifiers=nil)
    -> BehaviorSubject ExpEnd

    BooleanProperty(Value=false)
    -> BehaviorSubject OkToLick?

    BooleanProperty(Value=false)
    -> BehaviorSubject EarlyLick

    BooleanProperty(Value=false)
    -> BehaviorSubject TrialEnd

    IntProperty(Value=0)
    -> BehaviorSubject Tone

    StringProperty(Value=QP04)
    -> BehaviorSubject MouseID

    FloatProperty(Value=300)
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject ToneDur

    FloatProperty(Value=300)
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject GoCueDur

    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    IntProperty(Value=0)
    -> BehaviorSubject "RewSide "

    IntProperty(Value=0)
    -> BehaviorSubject DelayedReward

    IntProperty(Value=0)
    -> BehaviorSubject Reward

    BooleanProperty(Value=false)
    -> BehaviorSubject AbortTrial

    IntProperty(Value=0)
    -> BehaviorSubject Attempts

    IntProperty(Value=0)
    -> BehaviorSubject CorrectCount

    IntProperty(Value=0)
    -> BehaviorSubject RewardCount

    FloatProperty(Value=0.5)
    -> BehaviorSubject %_Right_Licks

    IntProperty(Value=80)
    -> BehaviorSubject Sa

    IntProperty(Value=80)
    -> BehaviorSubject Sb

    IntProperty(Value=3)
    -> BehaviorSubject StimID

    IntProperty(Value=7)
    -> BehaviorSubject ViolID

    IntProperty(Value=6)
    -> BehaviorSubject GoCueID

    IntProperty(Value=0)
    -> BehaviorSubject SubsequentLick

    TimeSpanProperty(Value=PT0.1S)
    -> ReplaySubject ViolDur(BufferSize=nil)

    TimeSpanProperty(Value=PT0.8S)
    -> ReplaySubject RewardDur(BufferSize=nil)

    GroupWorkflow Timestamp
        IntProperty(Value=0)
        -> Timestamp
        -> MemberSelector(Selector=Timestamp)
        -> MemberSelector(Selector=TimeOfDay)
        -> WorkflowOutput
    -> BehaviorSubject RewardToneTime

    IntProperty(Value=5)
    -> BehaviorSubject RewardID

    IntProperty(Value=80)
    -> BehaviorSubject Amp1

    IntProperty(Value=80)
    -> BehaviorSubject Amp2

SubscribeSubject ExpEnd => #6
SubscribeSubject ITI
-> PropertyMapping(DueTime)
-> Timer(DueTime=PT2S, Period=PT0S)
-> Sink PrepTrial
    WorkflowInput Source1
    -> Sink SetSpouts
        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject Beam1Bool

        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject Beam2Bool

        Disable SubscribeSubject Beam0Bool
        -> Disable Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> Disable BooleanProperty(Value=true)
        -> Disable MulticastSubject Beam0Bool
    -> Sink ResetAttempts
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> MulticastSubject Attempts
        -> WorkflowOutput
    -> WorkflowOutput
-> SelectMany Trial
    WorkflowInput Source1
    -> Sink GenAmps
        WorkflowInput Source1
        -> SelectMany GenAmp1
            Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=4)
            -> Bonsai.Numerics.Distributions.Sample
            -> Take(Count=1) => #2
            ExternalizedMapping(Value(DisplayName=Spacing)) => #3
            #2, #3 -> Multiply(Operand=IntProperty(Value=8)) => #4
            SubscribeSubject StartAmp
            -> PropertyMapping(Value)
            -> IntProperty(Value=43) => #7
            #4, #7 -> Zip
            -> Add
            -> WorkflowOutput
        -> MulticastSubject Amp1
        -> Disable MulticastSubject Sa
        -> SelectMany GenAmp2
            WorkflowInput Source1
            -> Take(Count=1) => #1
            SubscribeSubject StartAmp
            -> PropertyMapping(lower) => #3
            SubscribeSubject StartAmp
            -> Add(Operand=IntProperty(Value=32))
            -> PropertyMapping(upper) => #6
            #1, #3, #6 -> Condition Middles
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=lower)) => #1
                #0, #1 -> GreaterThan(Operand=IntProperty(Value=43)) => #2
                ExternalizedMapping(Value(DisplayName=upper)) => #3
                #0, #3 -> LessThan(Operand=IntProperty(Value=75)) => #4
                #2, #4 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            -> SelectMany +/- => #8
                WorkflowInput Source1 => #0
                Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample => #2
                -> Condition 0
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> LessThanOrEqual(Operand=DoubleProperty(Value=0.13529787957668304))
                    -> WorkflowOutput
                -> IntProperty(Value=8) => #4
                #2 -> Condition 1
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> GreaterThan(Operand=DoubleProperty(Value=0.13529787957668304))
                    -> WorkflowOutput
                -> IntProperty(Value=-8) => #6
                #4, #6 -> Merge => #7
                #0, #7 -> Zip
                -> Add
                -> WorkflowOutput
            #1, #3 -> Condition lower
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=lower)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=43))
                -> WorkflowOutput
            -> Add(Operand=IntProperty(Value=8)) => #10
            #1, #6 -> Condition upper
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=upper)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=75))
                -> WorkflowOutput
            -> Add(Operand=IntProperty(Value=-8)) => #12
            #10, #8, #12 -> Merge
            -> WorkflowOutput
        -> MulticastSubject Amp2
        -> Disable MulticastSubject Sb
        -> WorkflowOutput
    -> SelectMany AntiBias
        Disable SubscribeSubject TrialNumber => #0
        -> Disable Condition "Trial_Number > AntiBias_Window"
            WorkflowInput Source1 => #0
            SubscribeSubject Anti_Bias_Window
            -> PropertyMapping(Value) => #2
            #0, #2 -> GreaterThan(Operand=IntProperty(Value=3))
            -> Take(Count=1)
            -> WorkflowOutput
        -> Disable SelectMany Start_AntiBias => #2
            SubscribeSubject %_Right_Licks
            -> Take(Count=1) => #1
            -> Condition Below_30%
                WorkflowInput Source1
                -> LessThan(Operand=FloatProperty(Value=0.3))
                -> WorkflowOutput
            -> SelectMany "Sa > Sb" => #3
                SubscribeSubject Amp1 => #0
                -> Condition "Amp1 > Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThan(Operand=IntProperty(Value=80))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp1" => #2
                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Condition "Amp1 < Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=80))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp2" => #4
                    SubscribeSubject Amp2
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp1
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #1 -> Condition Above_30%
                WorkflowInput Source1
                -> GreaterThan(Operand=FloatProperty(Value=0.7))
                -> WorkflowOutput
            -> SelectMany "Sa < Sb" => #5
                SubscribeSubject Amp1 => #0
                -> Condition "Amp1 > Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThan(Operand=IntProperty(Value=84))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp2" => #2
                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Condition "Amp1 < Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=84))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp1" => #4
                    SubscribeSubject Amp2
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp1
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #1 -> Condition Random
                WorkflowInput Source1 => #0
                -> LessThanOrEqual(Operand=FloatProperty(Value=0.7)) => #1
                #0 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.3)) => #2
                #1, #2 -> Zip
                -> LogicalAnd
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany "Sa = Amp1 & Sb = Amp2"
                Disable Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
                -> Disable Bonsai.Numerics.Distributions.Sample
                -> Disable Take(Count=1) => #2
                -> Disable Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=0))
                    -> WorkflowOutput
                -> Disable SelectMany "Sa > Sb" => #4
                    Disable SubscribeSubject Amp1 => #0
                    -> Disable Condition "Amp1 > Amp2"
                        WorkflowInput Source1 => #0
                        SubscribeSubject Amp2
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> GreaterThan(Operand=IntProperty(Value=56))
                        -> WorkflowOutput
                    -> Disable SelectMany "Sa = Amp1" => #2
                        SubscribeSubject Amp1
                        -> MulticastSubject Sa => #1
                        SubscribeSubject Amp2
                        -> MulticastSubject Sb => #3
                        #1, #3 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Disable Condition "Amp1 < Amp2"
                        WorkflowInput Source1 => #0
                        SubscribeSubject Amp2
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> LessThan(Operand=IntProperty(Value=56))
                        -> WorkflowOutput
                    -> Disable SelectMany "Sa = Amp2" => #4
                        SubscribeSubject Amp2
                        -> MulticastSubject Sa => #1
                        SubscribeSubject Amp1
                        -> MulticastSubject Sb => #3
                        #1, #3 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #2, #4 -> Disable Merge
                    -> Disable Take(Count=1)
                    -> Disable WorkflowOutput

                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #9
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #11
                    #9, #11 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2 -> Disable Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> Disable SelectMany "Sa < Sb" => #6
                    SubscribeSubject Amp1 => #0
                    -> Condition "Amp1 > Amp2"
                        WorkflowInput Source1 => #0
                        SubscribeSubject Amp2
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> GreaterThan(Operand=IntProperty(Value=64))
                        -> WorkflowOutput
                    -> SelectMany "Sa = Amp2" => #2
                        SubscribeSubject Amp1
                        -> MulticastSubject Sa => #1
                        SubscribeSubject Amp2
                        -> MulticastSubject Sb => #3
                        #1, #3 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Condition "Amp1 < Amp2"
                        WorkflowInput Source1 => #0
                        SubscribeSubject Amp2
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> LessThan(Operand=IntProperty(Value=64))
                        -> WorkflowOutput
                    -> SelectMany "Sa = Amp1" => #4
                        SubscribeSubject Amp2
                        -> MulticastSubject Sa => #1
                        SubscribeSubject Amp1
                        -> MulticastSubject Sb => #3
                        #1, #3 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #2, #4 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #4, #6 -> Disable Merge
                -> Disable Take(Count=1)
                -> Disable WorkflowOutput

                SubscribeSubject Amp1
                -> MulticastSubject Sa => #11
                SubscribeSubject Amp2
                -> MulticastSubject Sb => #13
                #11, #13 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            -> Disable SelectMany Create_Discrete_Uniform
                Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample
                -> Take(Count=1)
                -> WorkflowOutput
            -> Disable Take(Count=1) => #9
            -> Disable Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> Disable SelectMany "Sa > Sb" => #11
                SubscribeSubject Amp1 => #0
                -> Condition "Amp1 > Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThan(Operand=IntProperty(Value=64))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp1" => #2
                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Condition "Amp1 < Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=64))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp2" => #4
                    SubscribeSubject Amp2
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp1
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #9 -> Disable Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Disable SelectMany "Sa < Sb" => #13
                SubscribeSubject Amp1 => #0
                -> Condition "Amp1 > Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThan(Operand=IntProperty(Value=64))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp2" => #2
                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Condition "Amp1 < Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=64))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp1" => #4
                    SubscribeSubject Amp2
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp1
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #3, #5, #11, #13 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Disable Condition "Trial_Number =< AntiBias_Window"
            WorkflowInput Source1 => #0
            SubscribeSubject Anti_Bias_Window
            -> PropertyMapping(Value) => #2
            #0, #2 -> LessThanOrEqual(Operand=IntProperty(Value=3))
            -> Take(Count=1)
            -> WorkflowOutput
        -> Disable SelectMany "Sa = Amp1 & Sb = Amp2" => #4
            Disable Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
            -> Disable Bonsai.Numerics.Distributions.Sample
            -> Disable Take(Count=1) => #2
            -> Disable Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> Disable SelectMany "Sa > Sb" => #4
                Disable SubscribeSubject Amp1 => #0
                -> Disable Condition "Amp1 > Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThan(Operand=IntProperty(Value=56))
                    -> WorkflowOutput
                -> Disable SelectMany "Sa = Amp1" => #2
                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Disable Condition "Amp1 < Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=56))
                    -> WorkflowOutput
                -> Disable SelectMany "Sa = Amp2" => #4
                    SubscribeSubject Amp2
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp1
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Disable Merge
                -> Disable Take(Count=1)
                -> Disable WorkflowOutput

                SubscribeSubject Amp1
                -> MulticastSubject Sa => #9
                SubscribeSubject Amp2
                -> MulticastSubject Sb => #11
                #9, #11 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #2 -> Disable Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Disable SelectMany "Sa < Sb" => #6
                SubscribeSubject Amp1 => #0
                -> Condition "Amp1 > Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThan(Operand=IntProperty(Value=64))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp2" => #2
                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Condition "Amp1 < Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=64))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp1" => #4
                    SubscribeSubject Amp2
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp1
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #4, #6 -> Disable Merge
            -> Disable Take(Count=1)
            -> Disable WorkflowOutput

            SubscribeSubject Amp1
            -> MulticastSubject Sa => #11
            SubscribeSubject Amp2
            -> MulticastSubject Sb => #13
            #11, #13 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #2, #4 -> Disable Merge
        -> Disable Take(Count=1)
        -> Disable WorkflowOutput

        WorkflowInput Source1
        -> SelectMany Start_AntiBias
            SubscribeSubject %_Right_Licks
            -> Take(Count=1) => #1
            -> Condition Below_30%
                WorkflowInput Source1
                -> LessThan(Operand=FloatProperty(Value=0.3))
                -> WorkflowOutput
            -> SelectMany "Sa > Sb" => #3
                SubscribeSubject Amp1 => #0
                -> Condition "Amp1 > Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThan(Operand=IntProperty(Value=84))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp1" => #2
                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Condition "Amp1 < Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=84))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp2" => #4
                    SubscribeSubject Amp2
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp1
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #1 -> Condition Above_30%
                WorkflowInput Source1
                -> GreaterThan(Operand=FloatProperty(Value=0.7))
                -> WorkflowOutput
            -> SelectMany "Sa < Sb" => #5
                SubscribeSubject Amp1 => #0
                -> Condition "Amp1 > Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThan(Operand=IntProperty(Value=69))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp2" => #2
                    SubscribeSubject Amp2
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp1
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Condition "Amp1 < Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=69))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp1" => #4
                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #1 -> Condition Random
                WorkflowInput Source1 => #0
                -> LessThanOrEqual(Operand=FloatProperty(Value=0.7)) => #1
                #0 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.3)) => #2
                #1, #2 -> Zip
                -> LogicalAnd
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany "Sa = Amp1 & Sb = Amp2"
                Disable Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
                -> Disable Bonsai.Numerics.Distributions.Sample
                -> Disable Take(Count=1) => #2
                -> Disable Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=0))
                    -> WorkflowOutput
                -> Disable SelectMany "Sa > Sb" => #4
                    Disable SubscribeSubject Amp1 => #0
                    -> Disable Condition "Amp1 > Amp2"
                        WorkflowInput Source1 => #0
                        SubscribeSubject Amp2
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> GreaterThan(Operand=IntProperty(Value=56))
                        -> WorkflowOutput
                    -> Disable SelectMany "Sa = Amp1" => #2
                        SubscribeSubject Amp1
                        -> MulticastSubject Sa => #1
                        SubscribeSubject Amp2
                        -> MulticastSubject Sb => #3
                        #1, #3 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Disable Condition "Amp1 < Amp2"
                        WorkflowInput Source1 => #0
                        SubscribeSubject Amp2
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> LessThan(Operand=IntProperty(Value=56))
                        -> WorkflowOutput
                    -> Disable SelectMany "Sa = Amp2" => #4
                        SubscribeSubject Amp2
                        -> MulticastSubject Sa => #1
                        SubscribeSubject Amp1
                        -> MulticastSubject Sb => #3
                        #1, #3 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #2, #4 -> Disable Merge
                    -> Disable Take(Count=1)
                    -> Disable WorkflowOutput

                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #9
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #11
                    #9, #11 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2 -> Disable Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> Disable SelectMany "Sa < Sb" => #6
                    SubscribeSubject Amp1 => #0
                    -> Condition "Amp1 > Amp2"
                        WorkflowInput Source1 => #0
                        SubscribeSubject Amp2
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> GreaterThan(Operand=IntProperty(Value=64))
                        -> WorkflowOutput
                    -> SelectMany "Sa = Amp2" => #2
                        SubscribeSubject Amp1
                        -> MulticastSubject Sa => #1
                        SubscribeSubject Amp2
                        -> MulticastSubject Sb => #3
                        #1, #3 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Condition "Amp1 < Amp2"
                        WorkflowInput Source1 => #0
                        SubscribeSubject Amp2
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> LessThan(Operand=IntProperty(Value=64))
                        -> WorkflowOutput
                    -> SelectMany "Sa = Amp1" => #4
                        SubscribeSubject Amp2
                        -> MulticastSubject Sa => #1
                        SubscribeSubject Amp1
                        -> MulticastSubject Sb => #3
                        #1, #3 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #2, #4 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #4, #6 -> Disable Merge
                -> Disable Take(Count=1)
                -> Disable WorkflowOutput

                SubscribeSubject Amp1
                -> MulticastSubject Sa => #11
                SubscribeSubject Amp2
                -> MulticastSubject Sb => #13
                #11, #13 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            -> Disable SelectMany Create_Discrete_Uniform
                Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample
                -> Take(Count=1)
                -> WorkflowOutput
            -> Disable Take(Count=1) => #9
            -> Disable Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> Disable SelectMany "Sa > Sb" => #11
                SubscribeSubject Amp1 => #0
                -> Condition "Amp1 > Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThan(Operand=IntProperty(Value=64))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp1" => #2
                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Condition "Amp1 < Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=64))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp2" => #4
                    SubscribeSubject Amp2
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp1
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #9 -> Disable Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Disable SelectMany "Sa < Sb" => #13
                SubscribeSubject Amp1 => #0
                -> Condition "Amp1 > Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> GreaterThan(Operand=IntProperty(Value=64))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp2" => #2
                    SubscribeSubject Amp1
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp2
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #0 -> Condition "Amp1 < Amp2"
                    WorkflowInput Source1 => #0
                    SubscribeSubject Amp2
                    -> PropertyMapping(Value) => #2
                    #0, #2 -> LessThan(Operand=IntProperty(Value=64))
                    -> WorkflowOutput
                -> SelectMany "Sa = Amp1" => #4
                    SubscribeSubject Amp2
                    -> MulticastSubject Sa => #1
                    SubscribeSubject Amp1
                    -> MulticastSubject Sb => #3
                    #1, #3 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #3, #5, #11, #13 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Sa
        WorkflowInput Source1 => #0
        SubscribeSubject Sa
        -> PropertyMapping(SoundLevel) => #2
        #0, #2 -> Sink SetLevel => #3
            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
            WorkflowInput Source1 => #1
            #1, #0 -> IntProperty(Value=67)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: (it-107.54)/-0.0764
            -> PropertyMapping(Value)
            -> IntProperty(Value=530)
            -> Sink Left
                WorkflowInput Source1
                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                -> MulticastSubject PlaySound
                -> WorkflowOutput
            -> Sink Right
                WorkflowInput Source1
                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                -> MulticastSubject PlaySound
                -> WorkflowOutput
            -> WorkflowOutput
        SubscribeSubject StimID
        -> PropertyMapping(Value) => #5
        #3, #5 -> IntProperty(Value=3)
        -> MulticastSubject SoundIndex => #7
        SubscribeSubject WNDur
        -> PropertyMapping(DueTime) => #9
        #7, #9 -> Delay(DueTime=PT0.04S)
        -> IntProperty(Value=30)
        -> MulticastSubject SoundIndex
        -> WorkflowOutput

        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #16
        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #19
        #16, #19 -> Merge
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> MulticastSubject EarlyLick
    -> SelectMany DelayPeriod
        Disable SubscribeSubject DelayDistribution
        -> Disable Bonsai.Numerics.Distributions.Sample
        -> Disable Bonsai.Scripting.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> Disable MulticastSubject DelayPeriod

        WorkflowInput Source1 => #4
        SubscribeSubject DelayPeriod
        -> PropertyMapping(DueTime) => #6
        #4, #6 -> Delay(DueTime=PT0.7S)
        -> Take(Count=1)
        -> WorkflowOutput

        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #12
        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #15
        #12, #15 -> Merge
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> MulticastSubject EarlyLick
    -> SelectMany Sb
        WorkflowInput Source1 => #0
        SubscribeSubject Sb
        -> PropertyMapping(SoundLevel) => #2
        #0, #2 -> Sink SetLevel => #3
            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
            WorkflowInput Source1 => #1
            #1, #0 -> IntProperty(Value=59)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: (it-107.54)/-0.0764
            -> PropertyMapping(Value)
            -> IntProperty(Value=635)
            -> Sink Left
                WorkflowInput Source1
                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                -> MulticastSubject PlaySound
                -> WorkflowOutput
            -> Sink Right
                WorkflowInput Source1
                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                -> MulticastSubject PlaySound
                -> WorkflowOutput
            -> WorkflowOutput
        SubscribeSubject StimID
        -> PropertyMapping(Value) => #5
        #3, #5 -> IntProperty(Value=3)
        -> MulticastSubject SoundIndex => #7
        SubscribeSubject WNDur
        -> PropertyMapping(DueTime) => #9
        #7, #9 -> Delay(DueTime=PT0.04S)
        -> IntProperty(Value=30)
        -> MulticastSubject SoundIndex
        -> Delay(DueTime=PT0.5S)
        -> WorkflowOutput

        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #17
        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #20
        #17, #20 -> Merge
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> MulticastSubject EarlyLick
    -> SelectMany Tone
        SubscribeSubject Sa => #0
        SubscribeSubject Sb => #1
        #0, #1 -> Zip
        -> LessThan => #3
        -> Condition "Sa < Sb"
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany 4Khz => #5
            SubscribeSubject 4kHz
            -> Sink SetLevel
                WorkflowInput Source1
                -> IntProperty(Value=90)
                -> Bonsai.Scripting.ExpressionTransform
                  Expression: (it-107.54)/-0.0764
                -> PropertyMapping(Value)
                -> IntProperty(Value=229)
                -> Sink Left
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> Sink Right
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> WorkflowOutput
            -> MulticastSubject Freq => #2
            SubscribeSubject ToneDur
            -> PropertyMapping(DueTime) => #4
            #2, #4 -> Delay(DueTime=PT0.3S)
            -> IntProperty(Value=3)
            -> MulticastSubject StopSound
            -> IntProperty(Value=4)
            -> MulticastSubject Tone
            -> Take(Count=1)
            -> WorkflowOutput
        #3 -> Condition "Sa > Sb"
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany 16kHz => #7
            SubscribeSubject 16kHz
            -> Sink SetLevel
                WorkflowInput Source1
                -> IntProperty(Value=90)
                -> Bonsai.Scripting.ExpressionTransform
                  Expression: (it-107.54)/-0.0764
                -> PropertyMapping(Value)
                -> IntProperty(Value=229)
                -> Sink Left
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> Sink Right
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> WorkflowOutput
            -> MulticastSubject Freq => #2
            SubscribeSubject ToneDur
            -> PropertyMapping(DueTime) => #4
            #2, #4 -> Delay(DueTime=PT0.3S)
            -> IntProperty(Value=3)
            -> MulticastSubject StopSound
            -> IntProperty(Value=16)
            -> MulticastSubject Tone
            -> Take(Count=1)
            -> WorkflowOutput
        #5, #7 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany GoCue => #7
        WorkflowInput Source1 => #0
        SubscribeSubject GoCueDur
        -> PropertyMapping(DueTime) => #2
        #0, #2 -> Delay(DueTime=PT0.3S)
        -> WorkflowOutput
    -> SelectMany Response
        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=4) => #2
        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=16) => #5
        #2, #5 -> Merge
        -> Take(Count=1)
        -> Sink ResetSpouts
            SubscribeSubject Beam1Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BooleanProperty(Value=true)
            -> MulticastSubject Beam1Bool

            SubscribeSubject Beam2Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BooleanProperty(Value=true)
            -> MulticastSubject Beam2Bool
        -> Sink RecordFirstLick
            WorkflowInput Source1
            -> MulticastSubject FirstLick
            -> WorkflowOutput
        -> Disable Sink Count_%_Right_Licks
            WorkflowInput Source1
            -> MulticastSubject FirstLick => #1
            -> Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=4))
                -> WorkflowOutput
            -> IntProperty(Value=0) => #3
            #1 -> Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=16))
                -> WorkflowOutput
            -> IntProperty(Value=1) => #5
            #3, #5 -> Merge
            -> Bonsai.Dsp.Buffer(Count=3, Skip=1)
            -> Bonsai.Dsp.Sum
            -> MemberSelector(Selector=Val0)
            -> Divide(Operand=DoubleProperty(Value=10))
            -> MulticastSubject %_Right_Licks
            -> WorkflowOutput
        -> Take(Count=1) => #11
        SubscribeSubject Tone => #12
        #12, #11 -> Zip
        -> Equal
        -> MulticastSubject Correct => #15
        -> Take(Count=1) => #16
        #15 -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1) => #18
        SubscribeSubject CorrectCount => #19
        #18, #19 -> Zip
        -> Take(Count=1)
        -> Add => #22
        #15 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=0) => #24
        #24, #19 -> Zip
        -> Add => #26
        #22, #26 -> Merge
        -> MulticastSubject CorrectCount => #28
        #16, #28 -> Zip
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    -> BooleanProperty(Value=false)
    -> MulticastSubject AbortTrial => #10
    SubscribeSubject ResponseWindow
    -> PropertyMapping(DueTime) => #12
    #7, #12 -> Delay(DueTime=PT10S)
    -> BooleanProperty(Value=false)
    -> MulticastSubject Correct
    -> BooleanProperty(Value=true)
    -> MulticastSubject AbortTrial => #17
    #10, #17 -> Merge => #18
    -> Condition
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> SelectMany Feedback => #20
        SubscribeSubject Correct => #0
        -> Condition Yes
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany Success
            SubscribeSubject FirstLick => #0
            -> Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=16))
                -> WorkflowOutput
            -> SelectMany RewardRight => #2
                WorkflowInput Source1
                -> Disable SelectMany RewardTone(Description=SoundCard)
                    SubscribeSubject RewardDur
                    -> PropertyMapping(DueTime) => #1
                    WorkflowInput Source1 => #2
                    ExternalizedMapping(SoundLevel) => #3
                    Source2=#2, Source2=#3 -> Sink SetLevel => #4
                        ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                        WorkflowInput Source1 => #1
                        #1, #0 -> IntProperty(Value=80)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=360)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    SubscribeSubject RewardID
                    -> PropertyMapping(Value) => #6
                    #4, #6 -> IntProperty(Value=5)
                    -> Take(Count=1)
                    -> MulticastSubject SoundIndex
                    -> Timestamp
                    -> MemberSelector(Selector=Timestamp.TimeOfDay)
                    -> MulticastSubject RewardToneTime => #12
                    #12, #1 -> Delay(DueTime=PT0.8S)
                    -> WorkflowOutput
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve)
                -> MulticastSubject BehModule => #3
                SubscribeSubject RightValveTime
                -> PropertyMapping(DueTime) => #5
                #3, #5 -> Delay(DueTime=PT0.001S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve)
                -> MulticastSubject BehModule
                -> IntProperty(Value=1)
                -> MulticastSubject "RewSide "
                -> WorkflowOutput
            #0 -> Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=4))
                -> WorkflowOutput
            -> SelectMany RewardLeft => #4
                WorkflowInput Source1
                -> Disable SelectMany RewardTone(Description=SoundCard)
                    SubscribeSubject RewardDur
                    -> PropertyMapping(DueTime) => #1
                    WorkflowInput Source1 => #2
                    ExternalizedMapping(SoundLevel) => #3
                    Source2=#2, Source2=#3 -> Sink SetLevel => #4
                        ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                        WorkflowInput Source1 => #1
                        #1, #0 -> IntProperty(Value=80)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=360)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    SubscribeSubject RewardID
                    -> PropertyMapping(Value) => #6
                    #4, #6 -> IntProperty(Value=5)
                    -> Take(Count=1)
                    -> MulticastSubject SoundIndex
                    -> Timestamp
                    -> MemberSelector(Selector=Timestamp.TimeOfDay)
                    -> MulticastSubject RewardToneTime => #12
                    #12, #1 -> Delay(DueTime=PT0.8S)
                    -> WorkflowOutput
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke1Valve)
                -> MulticastSubject BehModule => #3
                SubscribeSubject LeftValveTime
                -> PropertyMapping(DueTime) => #5
                #3, #5 -> Delay(DueTime=PT0.001S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve)
                -> MulticastSubject BehModule
                -> IntProperty(Value=0)
                -> MulticastSubject "RewSide "
                -> WorkflowOutput
            #4, #2 -> Merge
            -> WorkflowOutput
        -> IntProperty(Value=1) => #3
        #0 -> Condition No
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany Failure
            WorkflowInput Source1
            -> Disable IntProperty(Value=1)
            -> Disable MulticastSubject Attempts
            -> SelectMany Timeout
                WorkflowInput Source1 => #0
                SubscribeSubject TimeoutDuration
                -> PropertyMapping(DueTime) => #2
                #0, #2 -> Delay(DueTime=PT5S)
                -> WorkflowOutput
            -> WorkflowOutput
        -> IntProperty(Value=0) => #6
        #3, #6 -> Merge
        -> MulticastSubject TrialOutcome => #8
        -> Take(Count=1) => #9
        #8 -> Disable IntProperty(Value=1) => #10
        Disable SubscribeSubject RewardCount => #11
        #10, #11 -> Disable Zip
        -> Disable Take(Count=1)
        -> Disable Add
        -> Disable MulticastSubject RewardCount => #15
        #9, #15 -> Zip
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    #18 -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> IntProperty(Value=-1)
    -> MulticastSubject TrialOutcome => #23
    #20, #23 -> Merge
    -> Sink IncrementTrial
        SubscribeSubject TrialNumber => #0
        IntProperty(Value=1) => #1
        #0, #1 -> Zip
        -> Add
        -> MulticastSubject TrialNumber
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput
-> Disable SelectMany Increase_Delay_Period
    SubscribeSubject DelayPeriod
    -> Take(Count=1) => #1
    SubscribeSubject MaxDelayPeriod
    -> PropertyMapping(Value) => #3
    #1, #3 -> LessThan(Operand=TimeSpanProperty(Value=PT0.46S)) => #4
    -> Disable LessThanOrEqual(Operand=BooleanProperty(Value=false))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany Increment_If_Correct => #7
        SubscribeSubject Correct => #0
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany => #2
            SubscribeSubject DelayPeriod => #0
            FloatProperty(Value=10)
            -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: TimeSpan.FromMilliseconds(it)
            #0, #2 -> Zip
            -> Add
            -> MulticastSubject DelayPeriod
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany => #4
            SubscribeSubject DelayPeriod => #0
            FloatProperty(Value=0)
            -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: TimeSpan.FromMilliseconds(it)
            #0, #2 -> Zip
            -> Add
            -> MulticastSubject DelayPeriod
            -> Take(Count=1)
            -> WorkflowOutput
        #2, #4 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    #4 -> Condition
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> SelectMany DoNothing => #9
        SubscribeSubject DelayPeriod => #0
        FloatProperty(Value=0)
        -> Bonsai.Scripting.ExpressionTransform => #2
          Expression: TimeSpan.FromMilliseconds(it)
        #0, #2 -> Zip
        -> Add
        -> MulticastSubject DelayPeriod
        -> Take(Count=1)
        -> WorkflowOutput
    #7, #9 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> SelectMany Increase_WN_Dur
    SubscribeSubject WNDur
    -> Take(Count=1) => #1
    SubscribeSubject MaxWNDur
    -> PropertyMapping(Value) => #3
    #1, #3 -> LessThan(Operand=TimeSpanProperty(Value=PT0.4S)) => #4
    -> Condition => #5
        WorkflowInput Source1
        -> WorkflowOutput
    ExternalizedMapping(WN_Increment) => #6
    #5, #6 -> SelectMany Increment_If_Correct => #7
        ExternalizedMapping(WN_Increment) => #0
        SubscribeSubject Correct => #1
        -> Condition => #2
            WorkflowInput Source1
            -> WorkflowOutput
        #2, #0 -> SelectMany => #3
            SubscribeSubject WNDur => #0
            ExternalizedMapping(Value(DisplayName=WN_Increment))
            -> FloatProperty(Value=10)
            -> Bonsai.Scripting.ExpressionTransform => #3
              Expression: TimeSpan.FromMilliseconds(it)
            #0, #3 -> Zip
            -> Add
            -> MulticastSubject WNDur
            -> Take(Count=1)
            -> WorkflowOutput
        #1 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany => #5
            SubscribeSubject WNDur => #0
            FloatProperty(Value=0)
            -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: TimeSpan.FromMilliseconds(it)
            #0, #2 -> Zip
            -> Add
            -> MulticastSubject WNDur
            -> Take(Count=1)
            -> WorkflowOutput
        #3, #5 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    #4 -> Condition
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> SelectMany DoNothing => #9
        SubscribeSubject WNDur => #0
        FloatProperty(Value=0)
        -> Bonsai.Scripting.ExpressionTransform => #2
          Expression: TimeSpan.FromMilliseconds(it)
        #0, #2 -> Zip
        -> Add
        -> MulticastSubject WNDur
        -> Take(Count=1)
        -> WorkflowOutput
    #7, #9 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> SelectMany Increase_WN_Amp
    SubscribeSubject StartAmp
    -> Take(Count=1) => #1
    SubscribeSubject MaxStartAmp
    -> PropertyMapping(Value) => #3
    #1, #3 -> LessThan(Operand=IntProperty(Value=60)) => #4
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany Increment_If_Correct => #6
        SubscribeSubject Correct => #0
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany => #2
            SubscribeSubject StartAmp => #0
            IntProperty(Value=1) => #1
            #0, #1 -> Zip
            -> Add
            -> MulticastSubject StartAmp
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany => #4
            SubscribeSubject StartAmp => #0
            IntProperty(Value=0) => #1
            #0, #1 -> Zip
            -> Add
            -> MulticastSubject StartAmp
            -> Take(Count=1)
            -> WorkflowOutput
        #2, #4 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    #4 -> Condition
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> SelectMany DoNothing => #8
        SubscribeSubject StartAmp => #0
        IntProperty(Value=0) => #1
        #0, #1 -> Zip
        -> Add
        -> MulticastSubject StartAmp
        -> Take(Count=1)
        -> WorkflowOutput
    #6, #8 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> Sink EndTrial
    WorkflowInput Source1
    -> BooleanProperty(Value=true)
    -> MulticastSubject TrialEnd
    -> WorkflowOutput
-> Repeat => #16
#16, #6 -> TakeUntil
-> WorkflowOutput

ExternalizedMapping(Data_Path, Exp_Name, Animal_ID)
-> GroupWorkflow Control_Parameters
    ExternalizedMapping(Value(DisplayName=Data_Path))
    -> StringProperty(Value=../../Data) => #1
    ExternalizedMapping(Value(DisplayName=Exp_Name))
    -> StringProperty(Value=PWM_NSI_Stage_1) => #3
    ExternalizedMapping(Value(DisplayName=Animal_ID))
    -> StringProperty(Value=QP04)
    -> BehaviorSubject Animal_ID => #6
    IntProperty(Value=0)
    -> Timestamp => #8
    -> MemberSelector(Selector=Timestamp.DateTime.Year) => #9
    #8 -> MemberSelector(Selector=Timestamp.DateTime.Month) => #10
    #8 -> MemberSelector(Selector=Timestamp.Date.Day) => #11
    #9, #10, #11 -> Zip
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1.toString() + "_" + Item2.toString() + "_" + Item3.toString() as date
        )
    -> MemberSelector(Selector=date) => #14
    #1, #3, #6, #14 -> Zip => #15
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Trial_Summary.csv" as Trial_Summary_File_Name
        )
    -> MemberSelector(Selector=Trial_Summary_File_Name)
    -> BehaviorSubject Trial_File_Name
    #15 -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Detected_Licks.csv" as Licks_File_Name
        )
    -> MemberSelector(Selector=Licks_File_Name)
    -> BehaviorSubject Licks_File_Name

GroupWorkflow Count_%_Right_Licks(Description="Calculate rolling average oif correct trials over window of desired size-")
    SubscribeSubject FirstLick => #0
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=4))
        -> WorkflowOutput
    -> IntProperty(Value=0) => #2
    #0 -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=16))
        -> WorkflowOutput
    -> IntProperty(Value=1) => #4
    #2, #4 -> Merge => #5
    SubscribeSubject Anti_Bias_Window => #6
    -> PropertyMapping(Value) => #7
    #6 -> PropertyMapping(Count) => #8
    #5, #8 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
    -> Bonsai.Dsp.Sum
    -> MemberSelector(Selector=Val0) => #11
    #11, #7 -> Divide(Operand=DoubleProperty(Value=20))
    -> MulticastSubject %_Right_Licks
    -> WorkflowOutput

GroupWorkflow Save_Data
    SubscribeSubject FirstLick => #0
    SubscribeSubject TrialOutcome => #1
    SubscribeSubject TrialEnd => #2
    SubscribeSubject Tone => #3
    SubscribeSubject Animal_ID => #4
    SubscribeSubject "RewSide " => #5
    SubscribeSubject ITI => #6
    SubscribeSubject TrialNumber => #7
    SubscribeSubject AbortTrial => #8
    SubscribeSubject Correct => #9
    SubscribeSubject ResponseWindow => #10
    SubscribeSubject GoCueDur => #11
    SubscribeSubject CorrectCount => #12
    SubscribeSubject Trial_File_Name
    -> PropertyMapping(FileName) => #14
    SubscribeSubject WNDur => #15
    #4, #7, #3, #0, #9, #5, #15 -> CombineLatest => #16
    SubscribeSubject DelayPeriod => #17
    #1, #8, #12, #11, #6, #10, #17 -> CombineLatest => #18
    #16, #18 -> CombineLatest => #19
    SubscribeSubject Sa => #20
    SubscribeSubject Sb => #21
    #20, #21 -> CombineLatest => #22
    #19, #22 -> CombineLatest => #23
    #23, #2 -> Sample
    -> Timestamp => #25
    -> MemberSelector(Selector=Value) => #26
    #25 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #27
    #26, #27 -> Zip
    -> Bonsai.Scripting.ExpressionTransform => #29
      Expression:
        new(
        Item1.Item1.Item1.Item1 as Animal_ID,
        Item1.Item1.Item1.Item2 as TrialNumber,
        Item1.Item1.Item1.Item3 as Tone,
        Item1.Item1.Item1.Item4 as FirstLick,
        Item1.Item1.Item1.Item5 as Correct,
        Item1.Item1.Item1.Item6 as Rewside,
        Item1.Item1.Item1.Item7 as WNDur,

        Item1.Item1.Item2.Item1 as TrialOutcome,
        Item1.Item1.Item2.Item2 as AbortTrial,
        Item1.Item1.Item2.Item3 as CorrectCount,
        Item1.Item1.Item2.Item4 as GoCueDur,
        Item1.Item1.Item2.Item5 as ITI,
        Item1.Item1.Item2.Item6 as ReponseWindow,
        Item1.Item1.Item2.Item7 as DelayPeriod,

        Item1.Item2.Item1 as Stim1Amp,
        Item1.Item2.Item2 as Stim2Amp,

        Item2 as Time
        )
    #29, #14 -> Bonsai.IO.CsvWriter(FileName=../../Data/TEST/PWM_NSI_Stage_1_TEST_2022_6_15/Trial_Summary.csv, Append=true, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    -> WorkflowOutput

    SubscribeSubject Beam1Bool => #32
    -> Timestamp => #33
    -> MemberSelector(Selector=Value) => #34
    #33 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #35
    #32 -> StringProperty(Value=Beam1Bool) => #36
    #34, #35, #36 -> Zip => #37
    SubscribeSubject Beam2Bool => #38
    -> Timestamp => #39
    -> MemberSelector(Selector=Value) => #40
    #39 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #41
    #38 -> StringProperty(Value=Beam2Bool) => #42
    #40, #41, #42 -> Zip => #43
    #37, #43 -> Merge
    -> Bonsai.Scripting.ExpressionTransform => #45
      Expression:
        new(
        Item1 as State,
        Item2 as Time,
        Item3 as Spout
        )
    SubscribeSubject Licks_File_Name
    -> PropertyMapping(FileName) => #47
    #45, #47 -> Bonsai.IO.CsvWriter
      FileName=../../Data/TEST/PWM_NSI_Stage_1_TEST_2022_6_15/Detected_Licks.csv
      Delimiter=","
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true

GroupWorkflow Performance_Visualizer
    GroupWorkflow Percent_Correct
        SubscribeSubject CorrectCount => #0
        SubscribeSubject Visualizer_Window_Size => #1
        -> PropertyMapping(Value) => #2
        #1 -> PropertyMapping(Count) => #3
        #0, #3 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #6
        #6, #2 -> Divide(Operand=DoubleProperty(Value=20)) => #7
        #1 -> PropertyMapping(Count) => #8
        IntProperty(Value=0) => #9
        SubscribeSubject AbortTrial
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=1)
        -> Skip(Count=1) => #13
        #13, #9 -> Merge
        -> Accumulate => #15
        #15, #8 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #18
        #1 -> PropertyMapping(Value) => #19
        #18, #19 -> Divide(Operand=DoubleProperty(Value=20)) => #20
        #7, #20 -> Zip => #21
        -> MemberSelector(Selector=Item1) => #22
        #21 -> MemberSelector(Selector=Item2)
        -> PropertyMapping(Value) => #24
        #22, #24 -> Divide(Operand=DoubleProperty(Value=14.5))
        -> WorkflowOutput

    GroupWorkflow Percent_Abort
        SubscribeSubject Visualizer_Window_Size => #0
        -> PropertyMapping(Value) => #1
        #0 -> PropertyMapping(Count) => #2
        IntProperty(Value=0) => #3
        IntProperty(Value=0) => #4
        SubscribeSubject AbortTrial => #5
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1) => #7
        #5 -> IntProperty(Value=1)
        -> Skip(Count=1) => #9
        #9, #3 -> Merge
        -> Accumulate => #11
        #5 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=0) => #13
        #7, #13 -> Merge
        -> Skip(Count=1) => #15
        #15, #4 -> Merge
        -> Accumulate => #17
        #17, #2 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #20
        #20, #1 -> Divide(Operand=DoubleProperty(Value=20)) => #21
        #0 -> PropertyMapping(Count) => #22
        #11, #22 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #25
        #0 -> PropertyMapping(Value) => #26
        #25, #26 -> Divide(Operand=DoubleProperty(Value=20)) => #27
        #21, #27 -> Zip => #28
        -> MemberSelector(Selector=Item1) => #29
        #28 -> MemberSelector(Selector=Item2)
        -> PropertyMapping(Value) => #31
        #29, #31 -> Divide(Operand=DoubleProperty(Value=14.5))
        -> WorkflowOutput
