WorkflowBuilder(Version=2.5.1)
Bonsai.IO.CsvReader(FileName=C:\Users\MouseRoom\Desktop\HeadFixedBehavior\Params\Rig_Params.csv, SkipRows=0) => #0
-> Bonsai.Scripting.PythonTransform Beh
  Script:
    @returns(str)
    def process(value):
      len_output = 4
      param_spacing = 2
      param = 'Harp_Beh_Port'
      start = value.find(param) + len(param) + param_spacing
      end = start + len_output
      return(value[start:end])
-> PropertyMapping(PortName)
-> GroupWorkflow HarpBeh
  Description:
    Workflows to connect and interact with Harp Behaviour Module

    Will initialise device and create subjects:

    BehModuleInput -- Messagebytes -- output from devicecommand node to issue outputs to harp board

    BehBytes -- bytesarray -- messagebytes output to be written to .bin file with MatrixWriter node

    BeamXbool -- bool -- readout  for hi/lo state of photogate/lickspout connected to ethernet breakout ports
  Workflow
    BooleanProperty(Value=false)
    -> Bonsai.Harp.Format(MessageType=Write, Address=32, PayloadType=U8)
    -> BehaviorSubject BehModule

    ByteProperty(Value=0)
    -> ToArray
    -> BehaviorSubject BehBytes

    SubscribeSubject BehModule
    -> Skip(Count=1) => #7
    ExternalizedMapping(PortName) => #8
    #7, #8 -> Bonsai.Harp.Device(PortName=COM4, DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false)
    -> DelaySubscription(DueTime=PT1S) => #10
    -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke0InfraRedBeam)
    -> BehaviorSubject Beam0Bool
    #10 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke1InfraRedBeam)
    -> BehaviorSubject Beam1Bool
    #10 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke2InfraRedBeam)
    -> BehaviorSubject Beam2Bool
    #10 -> MemberSelector(Selector=MessageBytes)
    -> MulticastSubject BehBytes

    SubscribeSubject BehBytes
    -> Bonsai.Dsp.MatrixWriter(Path=C:\bonsai\bonsaiprotocols\base4harp\Beh_Hit_Data.bin, Suffix=FileCount, Overwrite=false, Layout=ColumnMajor)

    Bonsai.IO.CsvReader(FileName=C:\Users\MouseRoom\Desktop\HeadFixedBehavior\Params\Rig_Params.csv, SkipRows=0)
    -> Bonsai.Scripting.PythonTransform Beh
      Script:
        @returns(str)
        def process(value):
          len_output = 4
          param_spacing = 2
          param = 'Harp_Beh_Port'
          start = value.find(param) + len(param) + param_spacing
          end = start + len_output
          return(value[start:end])
    -> InputMapping(PortName)
#0 -> Bonsai.Scripting.PythonTransform Sound_Card
  Script:
    @returns(str)
    def process(value):
      len_output = 4
      param_spacing = 2
      param = 'Sound_Card_Port'
      start = value.find(param) + len(param) + param_spacing
      end = start + len_output
      return(value[start:end])
-> PropertyMapping(PortName)
-> GroupWorkflow HarpSoundCard
    SubscribeSubject PlaySound
    -> Skip(Count=1) => #1
    SubscribeSubject Soundcard?
    -> Condition => #3
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=true))
        -> WorkflowOutput
    SubscribeSubject SoundIndex
    -> Skip(Count=1)
    -> Timestamp
    -> MemberSelector(Selector=Timestamp) => #7
    SubscribeSubject Freq
    -> Skip(Count=1)
    -> Bonsai.Scripting.PythonTransform
      Script:
        @returns(float)
        def process(value):
          return 2**value
    -> Bonsai.Scripting.ExpressionTransform
      Expression: uint16(it)
    -> Bonsai.Harp.Format(MessageType=Write, Address=32, PayloadType=U16) => #12
    SubscribeSubject StopSound
    -> IntProperty(Value=3)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: byte(it)
    -> Bonsai.Harp.Format(MessageType=Write, Address=33, PayloadType=U8) => #16
    SubscribeSubject Volume
    -> Skip(Count=1)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: uint16(it)
    -> Sink
        WorkflowInput Source1
        -> Bonsai.Harp.Format(MessageType=Write, Address=34, PayloadType=U8)
        -> WorkflowOutput
    -> Bonsai.Harp.Format(MessageType=Write, Address=35, PayloadType=U8) => #21
    #12, #16, #21 -> Merge => #22
    #1, #22 -> Merge => #23
    ExternalizedMapping(PortName) => #24
    #23, #24 -> Bonsai.Harp.Device(PortName=COM3, DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false)
    -> DelaySubscription(DueTime=PT1S) => #26
    #26, #3 -> SubscribeWhen
    #23 -> Timestamp
    -> MemberSelector(Selector=Timestamp) => #29
    #29, #7 -> Zip
    -> Subtract

    IntProperty(Value=0)
    -> BehaviorSubject SoundIndex

    SubscribeSubject SoundIndex
    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U16, Payload=0)
    -> BehaviorSubject PlaySound

    ExternalizedMapping(Value(DisplayName=Soundcard?))
    -> BooleanProperty(Value=true)
    -> BehaviorSubject Soundcard?

    FloatProperty(Value=11.5)
    -> BehaviorSubject Freq

    IntProperty(Value=1000)
    -> BehaviorSubject Volume

    SubscribeSubject Freq
    -> BehaviorSubject PlayTone

    IntProperty(Value=3)
    -> BehaviorSubject StopSound

    FloatProperty(Value=11.96578)
    -> BehaviorSubject 4kHz

    FloatProperty(Value=13.96578)
    -> BehaviorSubject 16kHz

    FloatProperty(Value=12.96578)
    -> BehaviorSubject 8kHz
#0 -> Bonsai.Scripting.PythonTransform Room_ID
  Script:
    @returns(int)
    def process(value):
      len_output = 3
      param_spacing = 2
      param = 'Room_ID'
      start = value.find(param) + len(param) + param_spacing
      end = start + len_output
      return(int(value[start:end]))
-> PropertyMapping(Room_ID) => #8
#0 -> Bonsai.Scripting.PythonTransform Rig_ID
  Script:
    @returns(int)
    def process(value):
      len_output = 2
      param_spacing = 2
      param = 'Rig_ID'
      start = value.find(param) + len(param) + param_spacing
      end = start + len_output
      return(int(value[start:end]))
-> PropertyMapping(Rig_ID) => #10
#0 -> Bonsai.Scripting.PythonTransform Left_Valve
  Script:
    @returns(int)
    def process(value):
      len_output = 2
      param_spacing = 2
      param = 'Left_Valve_Time'
      start = value.find(param) + len(param) + param_spacing
      end = start + len_output
      return(int(value[start:end]))
-> PropertyMapping("LeftValveTime (ms)") => #12
#0 -> Bonsai.Scripting.PythonTransform Right_Valve
  Script:
    @returns(int)
    def process(value):
      len_output = 2
      param_spacing = 2
      param = 'Right_Valve_Time'
      start = value.find(param) + len(param) + param_spacing
      end = start + len_output
      return(int(value[start:end]))
-> PropertyMapping("RightValveTime (ms)") => #14
ExternalizedMapping("ResponseWindow (s)", "ITI (s)", Visualizer_Window_Size, "TimeoutDuration (s)", WN_Dur, "DelayPeriod (ms)", LowestAmp, Antibias_Kernel_Size) => #15
#8, #10, #12, #14, #15 -> GroupWorkflow DynamicVariables
    ExternalizedMapping(Value(DisplayName="RightValveTime (ms)"))
    -> FloatProperty(Value=49)
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject RightValveTime

    ExternalizedMapping(Value(DisplayName="LeftValveTime (ms)"))
    -> FloatProperty(Value=48)
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject LeftValveTime

    ExternalizedMapping(Value(DisplayName="ResponseWindow (s)"))
    -> FloatProperty(Value=10)
    -> Bonsai.Scripting.ExpressionTransform TimeFromSeconds
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject ResponseWindow

    ExternalizedMapping(Value(DisplayName="ITI (s)"))
    -> FloatProperty(Value=2)
    -> Bonsai.Scripting.ExpressionTransform TimeFromSeconds
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject ITI

    Disable ExternalizedMapping(Value(DisplayName=Anti_Bias_Window))
    -> Disable IntProperty(Value=20)
    -> Disable BehaviorSubject Anti_Bias_Window

    ExternalizedMapping(Value(DisplayName=Visualizer_Window_Size))
    -> IntProperty(Value=20)
    -> BehaviorSubject Visualizer_Window_Size

    ExternalizedMapping(Value(DisplayName="TimeoutDuration (s)"))
    -> FloatProperty(Value=3)
    -> Bonsai.Scripting.ExpressionTransform TimeFromSeconds
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject TimeoutDuration

    ExternalizedMapping(Value(DisplayName=WN_Dur))
    -> FloatProperty(Value=400)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject WNDur

    ExternalizedMapping(Value(DisplayName="DelayPeriod (ms)"))
    -> FloatProperty(Value=400)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject DelayPeriod

    ExternalizedMapping(Value(DisplayName=LowestAmp))
    -> IntProperty(Value=60)
    -> BehaviorSubject LowestAmp

    ExternalizedMapping(Value(DisplayName=Room_ID))
    -> IntProperty(Value=311)
    -> BehaviorSubject Room_ID

    ExternalizedMapping(Value(DisplayName=Rig_ID))
    -> IntProperty(Value=2)
    -> BehaviorSubject Rig_ID

    ExternalizedMapping(Value(DisplayName=Antibias_Kernel_Size))
    -> IntProperty(Value=30)
    -> BehaviorSubject Antibias_Kernel_Size

GroupWorkflow CameraStreaming
    Bonsai.Osc.CreateTcpServer(Name=Emitter, Port=1234, NoDelay=false, AllowNatTraversal=false)

    SubscribeSubject Video_File_Name
    -> PropertyMapping(FileName) => #2
    Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
    -> DelaySubscription(DueTime=PT1S)
    -> Retry => #5
    #5, #2 -> Bonsai.Vision.VideoWriter
      FileName=../../Data/TEST/PWM_NSI_Stage_3_TEST_2022_9_30/Video_data.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=true
      FourCC=FMP4
      FrameRate=60
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    #5 -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #8
    SubscribeSubject Video_Timestamps_File_Name
    -> PropertyMapping(FileName) => #10
    #8, #10 -> Bonsai.IO.TextWriter(FileName=../../Data/TEST/PWM_NSI_Stage_3_TEST_2022_9_30/Video_timestamps.txt, Suffix=Timestamp, Buffered=true, Overwrite=false, Append=false)
    #5 -> Bonsai.Dsp.ConvertToArray(Depth=nil)
    -> Bonsai.Osc.SendMessage(Connection=Emitter, Address=/tcpimage)

GroupWorkflow Render_Loop
    Bonsai.Shaders.CreateWindow
      Width=1
      Height=1
      VSync=On
      SwapSync=false
      ClearColor=Black
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Minimized
      DisplayDevice=Primary
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false

    Bonsai.Shaders.Timer(DueTime=PT0S)

GroupWorkflow StaticVariables
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=1, Upper=3)
    -> BehaviorSubject DelayDistribution

    BooleanProperty(Value=false)
    -> BehaviorSubject Correct

    IntProperty(Value=0)
    -> PublishSubject TrialOutcome

    IntProperty(Value=0)
    -> BehaviorSubject FirstLick

    IntProperty(Value=0)
    -> BehaviorSubject SecondLick

    Bonsai.Shaders.Input.KeyDown(Key=End, Modifiers=nil)
    -> BehaviorSubject ExpEnd

    BooleanProperty(Value=false)
    -> BehaviorSubject OkToLick?

    BooleanProperty(Value=false)
    -> BehaviorSubject EarlyLick

    BooleanProperty(Value=false)
    -> BehaviorSubject TrialEnd

    IntProperty(Value=0)
    -> BehaviorSubject Tone

    StringProperty(Value=QP04)
    -> BehaviorSubject MouseID

    FloatProperty(Value=300)
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject ToneDur

    FloatProperty(Value=300)
    -> Bonsai.Scripting.ExpressionTransform TimeFromMilliseconds
      Expression: TimeSpan.FromMilliseconds(it)
    -> BehaviorSubject GoCueDur

    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    IntProperty(Value=0)
    -> BehaviorSubject "RewSide "

    IntProperty(Value=0)
    -> BehaviorSubject DelayedReward

    IntProperty(Value=0)
    -> BehaviorSubject Reward

    BooleanProperty(Value=false)
    -> BehaviorSubject AbortTrial

    IntProperty(Value=0)
    -> BehaviorSubject Attempts

    IntProperty(Value=0)
    -> BehaviorSubject CorrectCount

    IntProperty(Value=0)
    -> BehaviorSubject RewardCount

    FloatProperty(Value=0.5)
    -> BehaviorSubject %_Right_Licks

    IntProperty(Value=80)
    -> BehaviorSubject Sa

    IntProperty(Value=80)
    -> BehaviorSubject Sb

    IntProperty(Value=3)
    -> BehaviorSubject StimID

    IntProperty(Value=7)
    -> BehaviorSubject ViolID

    IntProperty(Value=6)
    -> BehaviorSubject GoCueID

    TimeSpanProperty(Value=PT0.1S)
    -> ReplaySubject ViolDur(BufferSize=nil)

    TimeSpanProperty(Value=PT0.8S)
    -> ReplaySubject RewardDur(BufferSize=nil)

    GroupWorkflow Timestamp
        IntProperty(Value=0)
        -> Timestamp
        -> MemberSelector(Selector=Timestamp)
        -> MemberSelector(Selector=TimeOfDay)
        -> WorkflowOutput
    -> BehaviorSubject RewardToneTime

    IntProperty(Value=5)
    -> BehaviorSubject RewardID

    IntProperty(Value=80)
    -> BehaviorSubject Amp1

    IntProperty(Value=80)
    -> BehaviorSubject Amp2

    IntProperty(Value=90)
    -> BehaviorSubject ToneAmp

    IntProperty(Value=0)
    -> BehaviorSubject Time

    IntProperty(Value=0)
    -> BehaviorSubject "Response_Latency (ms)"

    FloatProperty(Value=0.5)
    -> BehaviorSubject P_Left

SubscribeSubject ExpEnd => #20
SubscribeSubject ITI
-> PropertyMapping(DueTime)
-> Timer(DueTime=PT2S, Period=PT0S)
-> Sink PrepTrial
    WorkflowInput Source1
    -> Sink SetSpouts
        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject Beam1Bool

        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject Beam2Bool
    -> Sink ResetAttempts
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> MulticastSubject Attempts
        -> WorkflowOutput
    -> Sink CheckValvesClosed
        WorkflowInput Source1 => #0
        -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve)
        -> MulticastSubject BehModule => #2
        #0 -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve)
        -> MulticastSubject BehModule => #4
        #2, #4 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> Sink "TrialEnd = False"
        WorkflowInput Source1
        -> BooleanProperty(Value=false)
        -> MulticastSubject TrialEnd
        -> WorkflowOutput
    -> WorkflowOutput
-> SelectMany Trial
    WorkflowInput Source1
    -> Sink GenAmps
        WorkflowInput Source1
        -> SelectMany GenAmp1
            ExternalizedMapping(Value(DisplayName=Spacing)) => #0
            SubscribeSubject LowestAmp
            -> PropertyMapping(Value)
            -> IntProperty(Value=60) => #3
            Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
            -> Bonsai.Numerics.Distributions.Sample => #5
            -> Condition c_0
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=upper_bound)) => #1
                #0, #1 -> LessThan(Operand=DoubleProperty(Value=0.125))
                -> WorkflowOutput
            -> IntProperty(Value=0) => #7
            #5 -> Condition c_1
                WorkflowInput Source1 => #0
                BooleanProperty(Value=true) => #1
                ExternalizedMapping(Value(DisplayName=lower_bound)) => #2
                #0, #2 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0.125)) => #3
                ExternalizedMapping(Value(DisplayName=upper_bound)) => #4
                #0, #4 -> LessThan(Operand=DoubleProperty(Value=0.375)) => #5
                #1, #3, #5 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            -> IntProperty(Value=1) => #9
            #5 -> Condition c_4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=lower_bound)) => #1
                #0, #1 -> GreaterThan(Operand=DoubleProperty(Value=0.875))
                -> WorkflowOutput
            -> IntProperty(Value=4) => #11
            #5 -> Condition c_2
                WorkflowInput Source1 => #0
                BooleanProperty(Value=true) => #1
                ExternalizedMapping(Value(DisplayName=lower_bound)) => #2
                #0, #2 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0.375)) => #3
                ExternalizedMapping(Value(DisplayName=upper_bound)) => #4
                #0, #4 -> LessThan(Operand=DoubleProperty(Value=0.625)) => #5
                #1, #3, #5 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            -> IntProperty(Value=2) => #13
            #5 -> Condition c_3
                WorkflowInput Source1 => #0
                BooleanProperty(Value=true) => #1
                ExternalizedMapping(Value(DisplayName=lower_bound)) => #2
                #0, #2 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0.625)) => #3
                ExternalizedMapping(Value(DisplayName=upper_bound)) => #4
                #0, #4 -> LessThan(Operand=DoubleProperty(Value=0.875)) => #5
                #1, #3, #5 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            -> IntProperty(Value=3) => #15
            #7, #9, #13, #15, #11 -> Merge
            -> Take(Count=1) => #17
            #17, #0 -> Multiply(Operand=IntProperty(Value=8)) => #18
            #18, #3 -> Zip
            -> Add
            -> WorkflowOutput
        -> MulticastSubject Amp1
        -> SelectMany GenAmp2
            WorkflowInput Source1
            -> Take(Count=1) => #1
            SubscribeSubject LowestAmp => #2
            -> PropertyMapping(lower) => #3
            #2 -> Add(Operand=IntProperty(Value=32))
            -> PropertyMapping(upper) => #5
            #1, #3, #5 -> Condition Middles
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=lower)) => #1
                #0, #1 -> GreaterThan(Operand=IntProperty(Value=60)) => #2
                ExternalizedMapping(Value(DisplayName=upper)) => #3
                #0, #3 -> LessThan(Operand=IntProperty(Value=92)) => #4
                #0 -> BooleanProperty(Value=true) => #5
                #2, #4, #5 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            -> SelectMany +/- => #7
                WorkflowInput Source1 => #0
                Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample => #2
                -> Condition 0
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> LessThanOrEqual(Operand=DoubleProperty(Value=0.5))
                    -> WorkflowOutput
                -> IntProperty(Value=8) => #4
                #2 -> Condition 1
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> GreaterThan(Operand=DoubleProperty(Value=0.5))
                    -> WorkflowOutput
                -> IntProperty(Value=-8) => #6
                #4, #6 -> Merge => #7
                #0, #7 -> Zip
                -> Add
                -> WorkflowOutput
            #1, #3 -> Condition lower
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=lower)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=60))
                -> WorkflowOutput
            -> Add(Operand=IntProperty(Value=8)) => #9
            #1, #5 -> Condition upper
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=upper)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=92))
                -> WorkflowOutput
            -> Add(Operand=IntProperty(Value=-8)) => #11
            #9, #7, #11 -> Merge
            -> WorkflowOutput
        -> MulticastSubject Amp2
        -> WorkflowOutput
    -> SelectMany AntiBias
        WorkflowInput Source1
        -> SelectMany Sample_Continuous_Dist => #1
            Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
            -> Bonsai.Numerics.Distributions.Sample
            -> WorkflowOutput
        SubscribeSubject P_Left => #2
        -> PropertyMapping(Value) => #3
        #1, #3 -> LessThanOrEqual(Operand=DoubleProperty(Value=0.5))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany "Sa < Sb" => #6
            SubscribeSubject Amp1 => #0
            -> Condition "Amp1 > Amp2"
                WorkflowInput Source1 => #0
                SubscribeSubject Amp2
                -> PropertyMapping(Value) => #2
                #0, #2 -> GreaterThan(Operand=IntProperty(Value=84))
                -> WorkflowOutput
            -> SelectMany "Sa = Amp2" => #2
                SubscribeSubject Amp2
                -> MulticastSubject Sa => #1
                SubscribeSubject Amp1
                -> MulticastSubject Sb => #3
                #1, #3 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #0 -> Condition "Amp1 < Amp2"
                WorkflowInput Source1 => #0
                SubscribeSubject Amp2
                -> PropertyMapping(Value) => #2
                #0, #2 -> LessThan(Operand=IntProperty(Value=84))
                -> WorkflowOutput
            -> SelectMany "Sa = Amp1" => #4
                SubscribeSubject Amp1
                -> MulticastSubject Sa => #1
                SubscribeSubject Amp2
                -> MulticastSubject Sb => #3
                #1, #3 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #2, #4 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #2 -> PropertyMapping(Value) => #7
        #1, #7 -> GreaterThan(Operand=DoubleProperty(Value=0.5))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany "Sa > Sb" => #10
            SubscribeSubject Amp1 => #0
            -> Condition "Amp1 > Amp2"
                WorkflowInput Source1 => #0
                SubscribeSubject Amp2
                -> PropertyMapping(Value) => #2
                #0, #2 -> GreaterThan(Operand=IntProperty(Value=68))
                -> WorkflowOutput
            -> SelectMany "Sa = Amp1" => #2
                SubscribeSubject Amp1
                -> MulticastSubject Sa => #1
                SubscribeSubject Amp2
                -> MulticastSubject Sb => #3
                #1, #3 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #0 -> Condition "Amp1 < Amp2"
                WorkflowInput Source1 => #0
                SubscribeSubject Amp2
                -> PropertyMapping(Value) => #2
                #0, #2 -> LessThan(Operand=IntProperty(Value=68))
                -> WorkflowOutput
            -> SelectMany "Sa = Amp2" => #4
                SubscribeSubject Amp2
                -> MulticastSubject Sa => #1
                SubscribeSubject Amp1
                -> MulticastSubject Sb => #3
                #1, #3 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #2, #4 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #6, #10 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Sa
        WorkflowInput Source1 => #0
        SubscribeSubject Sa
        -> PropertyMapping(SoundLevel) => #2
        #0, #2 -> Sink SetLevel => #3
            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
            WorkflowInput Source1 => #1
            #1, #0 -> IntProperty(Value=76)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: (it-107.54)/-0.0764
            -> PropertyMapping(Value)
            -> IntProperty(Value=412)
            -> Sink Left
                WorkflowInput Source1
                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                -> MulticastSubject PlaySound
                -> WorkflowOutput
            -> Sink Right
                WorkflowInput Source1
                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                -> MulticastSubject PlaySound
                -> WorkflowOutput
            -> WorkflowOutput
        SubscribeSubject StimID
        -> PropertyMapping(Value) => #5
        #3, #5 -> IntProperty(Value=3)
        -> MulticastSubject SoundIndex => #7
        SubscribeSubject WNDur
        -> PropertyMapping(DueTime) => #9
        #7, #9 -> Delay(DueTime=PT0.4S)
        -> IntProperty(Value=30)
        -> MulticastSubject SoundIndex
        -> WorkflowOutput
    -> SelectMany DelayPeriod
        WorkflowInput Source1 => #0
        SubscribeSubject DelayPeriod
        -> PropertyMapping(DueTime) => #2
        #0, #2 -> Delay(DueTime=PT0.4S)
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Sb
        WorkflowInput Source1 => #0
        SubscribeSubject Sb
        -> PropertyMapping(SoundLevel) => #2
        #0, #2 -> Sink SetLevel => #3
            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
            WorkflowInput Source1 => #1
            #1, #0 -> IntProperty(Value=68)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: (it-107.54)/-0.0764
            -> PropertyMapping(Value)
            -> IntProperty(Value=517)
            -> Sink Left
                WorkflowInput Source1
                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                -> MulticastSubject PlaySound
                -> WorkflowOutput
            -> Sink Right
                WorkflowInput Source1
                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                -> MulticastSubject PlaySound
                -> WorkflowOutput
            -> WorkflowOutput
        SubscribeSubject StimID
        -> PropertyMapping(Value) => #5
        #3, #5 -> IntProperty(Value=3)
        -> MulticastSubject SoundIndex => #7
        SubscribeSubject WNDur
        -> PropertyMapping(DueTime) => #9
        #7, #9 -> Delay(DueTime=PT0.4S)
        -> IntProperty(Value=30)
        -> MulticastSubject SoundIndex
        -> Delay(DueTime=PT0.5S)
        -> WorkflowOutput
    -> SelectMany Tone
        WorkflowInput Source1
        -> SelectMany 4Khz
            SubscribeSubject ToneDur
            -> PropertyMapping(DueTime) => #1
            SubscribeSubject 4kHz
            -> Sink SetLevel
                WorkflowInput Source1 => #0
                SubscribeSubject ToneAmp
                -> PropertyMapping(Value) => #2
                #0, #2 -> IntProperty(Value=90)
                -> Bonsai.Scripting.ExpressionTransform
                  Expression: (it-107.54)/-0.0764
                -> PropertyMapping(Value)
                -> IntProperty(Value=229)
                -> Sink Left
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> Sink Right
                    WorkflowInput Source1
                    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                    -> MulticastSubject PlaySound
                    -> WorkflowOutput
                -> WorkflowOutput
            -> MulticastSubject Freq => #4
            #4, #1 -> Delay(DueTime=PT0.3S)
            -> IntProperty(Value=3)
            -> MulticastSubject StopSound
            -> IntProperty(Value=8)
            -> MulticastSubject Tone
            -> Take(Count=1)
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany GoCue => #7
        WorkflowInput Source1 => #0
        SubscribeSubject GoCueDur
        -> PropertyMapping(DueTime) => #2
        #0, #2 -> Delay(DueTime=PT0.3S)
        -> WorkflowOutput
    -> SelectMany Response => #8
        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=0) => #2
        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=1) => #5
        #2, #5 -> Merge
        -> Take(Count=1)
        -> SelectMany Record_Choice
            WorkflowInput Source1 => #0
            -> Disable MulticastSubject c_0
            -> MulticastSubject FirstLick
            -> WorkflowOutput
            #0 -> Disable SkipLast(Count=1)
            -> Disable MulticastSubject c_1
            #0 -> Disable SkipLast(Count=2)
            -> Disable MulticastSubject c_2
            #0 -> Disable SkipLast(Count=3)
            -> Disable MulticastSubject c_3
            #0 -> Disable SkipLast(Count=4)
            -> Disable MulticastSubject c_4
            #0 -> Disable SkipLast(Count=5)
            -> Disable MulticastSubject c_5
            #0 -> Disable SkipLast(Count=6)
            -> Disable MulticastSubject c_6
        -> Sink ResetSpouts
            SubscribeSubject Beam1Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BooleanProperty(Value=true)
            -> MulticastSubject Beam1Bool

            SubscribeSubject Beam2Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BooleanProperty(Value=true)
            -> MulticastSubject Beam2Bool
        -> Take(Count=1) => #10
        SubscribeSubject CorrectCount => #11
        SubscribeSubject Sa => #12
        SubscribeSubject Sb => #13
        #13, #12 -> Zip
        -> GreaterThan => #15
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=0) => #17
        #15 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=1) => #19
        #17, #19 -> Merge
        -> Take(Count=1) => #21
        #21, #10 -> Zip
        -> Equal
        -> MulticastSubject Correct => #24
        -> Take(Count=1) => #25
        #24 -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1) => #27
        #27, #11 -> Zip
        -> Take(Count=1)
        -> Add => #30
        #24 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=0) => #32
        #32, #11 -> Zip
        -> Add => #34
        #30, #34 -> Merge
        -> MulticastSubject CorrectCount => #36
        #25, #36 -> Zip
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    -> BooleanProperty(Value=false)
    -> MulticastSubject AbortTrial => #10
    SubscribeSubject ResponseWindow
    -> PropertyMapping(DueTime) => #12
    #7, #12 -> Delay(DueTime=PT10S)
    -> BooleanProperty(Value=false)
    -> MulticastSubject Correct
    -> BooleanProperty(Value=true)
    -> MulticastSubject AbortTrial => #17
    #10, #17 -> Merge => #18
    -> Condition
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> SelectMany Feedback => #20
        SubscribeSubject Correct => #0
        -> Condition Yes
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany Success
            SubscribeSubject FirstLick => #0
            -> Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> SelectMany RewardRight => #2
                WorkflowInput Source1
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve)
                -> MulticastSubject BehModule => #2
                SubscribeSubject RightValveTime
                -> PropertyMapping(DueTime) => #4
                #2, #4 -> Delay(DueTime=PT0.049S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve)
                -> MulticastSubject BehModule
                -> IntProperty(Value=1)
                -> MulticastSubject "RewSide "
                -> WorkflowOutput
            #0 -> Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> SelectMany RewardLeft => #4
                WorkflowInput Source1
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke1Valve)
                -> MulticastSubject BehModule => #2
                SubscribeSubject LeftValveTime
                -> PropertyMapping(DueTime) => #4
                #2, #4 -> Delay(DueTime=PT0.048S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve)
                -> MulticastSubject BehModule
                -> IntProperty(Value=0)
                -> MulticastSubject "RewSide "
                -> WorkflowOutput
            #4, #2 -> Merge
            -> WorkflowOutput
        -> IntProperty(Value=1) => #3
        #0 -> Condition No
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany Failure
            WorkflowInput Source1
            -> Disable IntProperty(Value=1)
            -> Disable MulticastSubject Attempts
            -> SelectMany Timeout
                WorkflowInput Source1 => #0
                SubscribeSubject TimeoutDuration
                -> PropertyMapping(DueTime) => #2
                #0, #2 -> Delay(DueTime=PT3S)
                -> WorkflowOutput
            -> WorkflowOutput
        -> IntProperty(Value=0) => #6
        #3, #6 -> Merge
        -> MulticastSubject TrialOutcome
        -> Take(Count=1)
        -> WorkflowOutput
    #18 -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> IntProperty(Value=-1)
    -> MulticastSubject TrialOutcome => #23
    #20, #23 -> Merge
    -> Sink IncrementTrial
        SubscribeSubject TrialNumber => #0
        IntProperty(Value=1) => #1
        #0, #1 -> Zip
        -> Add
        -> MulticastSubject TrialNumber
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput
    #7, #8 -> GroupWorkflow Record_Latency
        SubscribeSubject TrialEnd
        -> Condition => #1
            WorkflowInput Source1
            -> WorkflowOutput
        WorkflowInput Source1
        -> SelectMany Start_Timer => #3
            Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.001S)
            -> MulticastSubject Time
            -> WorkflowOutput
        WorkflowInput Source2 => #4
        #1, #4 -> Merge => #5
        #3, #5 -> TakeUntil
        -> TakeLast(Count=1)
        -> MulticastSubject "Response_Latency (ms)"
        -> WorkflowOutput
-> Sink EndTrial
    WorkflowInput Source1
    -> BooleanProperty(Value=true)
    -> MulticastSubject TrialEnd
    -> WorkflowOutput
-> Repeat => #27
#27, #20 -> TakeUntil
-> WorkflowOutput

ExternalizedMapping(Data_Path, Exp_Name, Animal_ID)
-> GroupWorkflow Control_Parameters
    ExternalizedMapping(Value(DisplayName=Data_Path))
    -> StringProperty(Value=../../Data) => #1
    ExternalizedMapping(Value(DisplayName=Exp_Name))
    -> StringProperty(Value=PWM_NSI_Stage_3) => #3
    ExternalizedMapping(Value(DisplayName=Animal_ID))
    -> StringProperty(Value=TEST)
    -> BehaviorSubject Animal_ID => #6
    IntProperty(Value=0)
    -> Timestamp => #8
    -> MemberSelector(Selector=Timestamp.DateTime.Year) => #9
    #8 -> MemberSelector(Selector=Timestamp.DateTime.Month) => #10
    #8 -> MemberSelector(Selector=Timestamp.Date.Day) => #11
    #9, #10, #11 -> Zip
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1.toString() + "_" + Item2.toString() + "_" + Item3.toString() as date
        )
    -> MemberSelector(Selector=date) => #14
    #1, #3, #6, #14 -> Zip => #15
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Trial_Summary.csv" as Trial_Summary_File_Name
        )
    -> MemberSelector(Selector=Trial_Summary_File_Name)
    -> BehaviorSubject Trial_File_Name
    #15 -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Detected_Licks.csv" as Licks_File_Name
        )
    -> MemberSelector(Selector=Licks_File_Name)
    -> BehaviorSubject Licks_File_Name
    #15 -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Video_data.avi" as Video_File_Name
        )
    -> MemberSelector(Selector=Video_File_Name)
    -> BehaviorSubject Video_File_Name
    #15 -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Video_timestamps.txt" as Video_Timestamps_File_Name
        )
    -> MemberSelector(Selector=Video_Timestamps_File_Name)
    -> BehaviorSubject Video_Timestamps_File_Name

GroupWorkflow Save_Data
    SubscribeSubject FirstLick => #0
    SubscribeSubject TrialOutcome => #1
    SubscribeSubject TrialEnd
    -> Condition => #3
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject Tone => #4
    SubscribeSubject Animal_ID => #5
    SubscribeSubject "RewSide " => #6
    SubscribeSubject ITI => #7
    SubscribeSubject TrialNumber => #8
    SubscribeSubject AbortTrial => #9
    SubscribeSubject Correct => #10
    SubscribeSubject ResponseWindow => #11
    SubscribeSubject GoCueDur => #12
    SubscribeSubject CorrectCount => #13
    SubscribeSubject Trial_File_Name
    -> PropertyMapping(FileName) => #15
    SubscribeSubject WNDur => #16
    #5, #8, #4, #0, #10, #6, #16 -> CombineLatest => #17
    SubscribeSubject DelayPeriod => #18
    SubscribeSubject Sa => #19
    SubscribeSubject Sb => #20
    SubscribeSubject ToneAmp => #21
    #1, #9, #13, #21, #12, #7, #11 -> CombineLatest => #22
    #17, #22 -> CombineLatest => #23
    SubscribeSubject "Response_Latency (ms)" => #24
    SubscribeSubject Room_ID => #25
    SubscribeSubject Rig_ID => #26
    #19, #20, #18, #24, #25, #26 -> CombineLatest => #27
    #23, #27 -> CombineLatest => #28
    #28, #3 -> Sample
    -> Timestamp => #30
    -> MemberSelector(Selector=Value) => #31
    #30 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #32
    #31, #32 -> Zip
    -> Bonsai.Scripting.ExpressionTransform => #34
      Expression:
        new(
        Item1.Item1.Item1.Item1 as Animal_ID,
        Item1.Item1.Item1.Item2 as TrialNumber,
        Item1.Item1.Item1.Item3 as Tone,
        Item1.Item1.Item1.Item4 as FirstLick,
        Item1.Item1.Item1.Item5 as Correct,
        Item1.Item1.Item1.Item6 as Rewside,
        Item1.Item1.Item1.Item7 as WNDur,

        Item1.Item1.Item2.Item1 as TrialOutcome,
        Item1.Item1.Item2.Item2 as AbortTrial,
        Item1.Item1.Item2.Item3 as CorrectCount,
        Item1.Item1.Item2.Item4 as ToneAmp,
        Item1.Item1.Item2.Item5 as GoCueDur,
        Item1.Item1.Item2.Item6 as ITI,
        Item1.Item1.Item2.Item7 as ReponseWindow,

        Item1.Item2.Item1 as Stim1Amp,
        Item1.Item2.Item2 as Stim2Amp,
        Item1.Item2.Item3 as DelayPeriod,
        Item1.Item2.Item4 as Response_Latency,
        Item1.Item2.Item5 as Room_ID,
        Item1.Item2.Item6 as Rig_ID,
        Item2 as Time
        )
    #34, #15 -> Bonsai.IO.CsvWriter(FileName=../../Data/TEST/PWM_NSI_Stage_3_TEST_2022_9_30/Trial_Summary.csv, Append=true, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    -> WorkflowOutput

    SubscribeSubject Beam1Bool => #37
    -> Timestamp => #38
    -> MemberSelector(Selector=Value) => #39
    #38 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #40
    #37 -> StringProperty(Value=Beam1Bool) => #41
    #39, #40, #41 -> Zip => #42
    SubscribeSubject Beam2Bool => #43
    -> Timestamp => #44
    -> MemberSelector(Selector=Value) => #45
    #44 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #46
    #43 -> StringProperty(Value=Beam2Bool) => #47
    #45, #46, #47 -> Zip => #48
    #42, #48 -> Merge
    -> Bonsai.Scripting.ExpressionTransform => #50
      Expression:
        new(
        Item1 as State,
        Item2 as Time,
        Item3 as Spout
        )
    SubscribeSubject Licks_File_Name
    -> PropertyMapping(FileName) => #52
    #50, #52 -> Bonsai.IO.CsvWriter
      FileName=../../Data/TEST/PWM_NSI_Stage_3_TEST_2022_9_30/Detected_Licks.csv
      Delimiter=","
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true

GroupWorkflow Stats
  Description:
    Light Blue = Percent_Correct
    Red = Percent_Right_Licks
    Orange = Percent_Abort_Trial
    Dark Blue = Normalised Response Latency
  Workflow
    GroupWorkflow Percent_Correct => #0
        SubscribeSubject CorrectCount => #0
        SubscribeSubject Visualizer_Window_Size => #1
        -> PropertyMapping(Value) => #2
        #1 -> PropertyMapping(Count) => #3
        #0, #3 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #6
        #6, #2 -> Divide(Operand=DoubleProperty(Value=20)) => #7
        #1 -> PropertyMapping(Count) => #8
        IntProperty(Value=0) => #9
        SubscribeSubject AbortTrial
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=1)
        -> Skip(Count=1) => #13
        #13, #9 -> Merge
        -> Accumulate => #15
        #15, #8 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #18
        #1 -> PropertyMapping(Value) => #19
        #18, #19 -> Divide(Operand=DoubleProperty(Value=20)) => #20
        #7, #20 -> Zip => #21
        -> MemberSelector(Selector=Item1) => #22
        #21 -> MemberSelector(Selector=Item2)
        -> PropertyMapping(Value) => #24
        #22, #24 -> Divide(Operand=DoubleProperty(Value=321.5))
        -> WorkflowOutput
    GroupWorkflow Percent_Abort => #1
        SubscribeSubject Visualizer_Window_Size => #0
        -> PropertyMapping(Value) => #1
        #0 -> PropertyMapping(Count) => #2
        IntProperty(Value=0) => #3
        IntProperty(Value=0) => #4
        SubscribeSubject AbortTrial => #5
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1) => #7
        #5 -> IntProperty(Value=1)
        -> Skip(Count=1) => #9
        #9, #3 -> Merge
        -> Accumulate => #11
        #5 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=0) => #13
        #7, #13 -> Merge
        -> Skip(Count=1) => #15
        #15, #4 -> Merge
        -> Accumulate => #17
        #17, #2 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #20
        #20, #1 -> Divide(Operand=DoubleProperty(Value=20)) => #21
        #0 -> PropertyMapping(Count) => #22
        #11, #22 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #25
        #0 -> PropertyMapping(Value) => #26
        #25, #26 -> Divide(Operand=DoubleProperty(Value=20)) => #27
        #21, #27 -> Zip => #28
        -> MemberSelector(Selector=Item1) => #29
        #28 -> MemberSelector(Selector=Item2)
        -> PropertyMapping(Value) => #31
        #29, #31 -> Divide(Operand=DoubleProperty(Value=477.5))
        -> WorkflowOutput
    GroupWorkflow P_Left => #2
        SubscribeSubject P_Left
        -> WorkflowOutput
    GroupWorkflow Average_Normalised_Latency => #3
        SubscribeSubject Visualizer_Window_Size => #0
        -> PropertyMapping(Value) => #1
        #0 -> PropertyMapping(Count) => #2
        SubscribeSubject "Response_Latency (ms)" => #3
        #3, #2 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0) => #6
        #6, #1 -> Divide(Operand=DoubleProperty(Value=20)) => #7
        SubscribeSubject ResponseWindow
        -> MemberSelector(Selector=TotalSeconds)
        -> Multiply(Operand=DoubleProperty(Value=1000))
        -> PropertyMapping(Value) => #11
        #7, #11 -> Divide(Operand=DoubleProperty(Value=10000))
        -> WorkflowOutput
    DoubleProperty(Value=0.5) => #4
    #0, #4 -> Merge => #5
    #1, #4 -> Merge => #6
    #3, #4 -> Merge => #7
    FloatProperty(Value=0.5) => #8
    #2, #8 -> Merge => #9
    #5, #6, #9, #7 -> CombineLatest
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1 as Percent_Correct,
        Item2 as Percent_Abort,
        Item3 as P_Left,
        Item4 as Avg_Norm_Latency
        )
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(ValueSelector="Percent_Correct,Percent_Abort,P_Left,Avg_Norm_Latency", Capacity=nil)
    -> WorkflowOutput

GroupWorkflow AntiBias
    SubscribeSubject TrialEnd
    -> Condition
        SubscribeSubject AbortTrial
        -> BitwiseNot
        -> Take(Count=1)
        -> WorkflowOutput
    -> Condition => #2
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject FirstLick => #3
    #3, #2 -> Sample => #4
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> FloatProperty(Value=0) => #6
    #4 -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> FloatProperty(Value=1) => #8
    #6, #8 -> Merge => #9
    SubscribeSubject Antibias_Kernel_Size
    -> PropertyMapping(Count) => #11
    #9, #11 -> Bonsai.Dsp.Buffer(Count=30, Skip=1)
    -> Antibias(alpha=2, beta=0.2, slope=10)
    -> MemberSelector(Selector=Item1)
    -> MulticastSubject P_Left
