WorkflowBuilder(Version=2.6.3)
Disable GroupWorkflow PWM_Visual
    GroupWorkflow Control_Parameters
        Disable BooleanProperty(Value=false)
        -> Disable BehaviorSubject OkToPress?

        BooleanProperty(Value=false)
        -> BehaviorSubject Correct

        IntProperty(Value=0)
        -> PublishSubject TrialOutcome

        BooleanProperty(Value=false)
        -> BehaviorSubject TrialEnd

        Bonsai.Shaders.Input.KeyDown(Key=End, Modifiers=nil)
        -> BehaviorSubject ExpEnd

    GroupWorkflow Setup_Screen
        Bonsai.Shaders.CreateWindow
          Width=640
          Height=480
          VSync=On
          SwapSync=false
          ClearColor=Gray
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=true
          Location=nil
          WindowBorder=Resizable
          WindowState=Normal
          DisplayDevice=Primary
          TargetRenderFrequency=60
          TargetUpdateFrequency=nil
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
        -> Bonsai.Resources.LoadResources

        Bonsai.Shaders.RenderFrame
        -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
        -> PublishSubject DrawGrating

        Bonsai.Shaders.RenderFrame
        -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
        -> PublishSubject PromptResponse

        Bonsai.Shaders.RenderFrame
        -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
        -> PublishSubject DrawQuad

        Bonsai.Shaders.RenderFrame
        -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
        -> PublishSubject WriteError

    GroupWorkflow Spatial_Frequency_Parameters
        Bonsai.Numerics.CreateRandom(Seed=42)
        -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=4)
        -> AsyncSubject SpatialFrequencyDistribution

        IntProperty(Value=0) => #3
        -> BehaviorSubject FirstSpatialFrequency
        #3 -> BehaviorSubject SecondSpatialFrequency

        Disable IntProperty(Value=16)
        -> Disable BehaviorSubject UpperBound

        IntProperty(Value=8)
        -> BehaviorSubject LowerBound

    GroupWorkflow Time_Parameters
        Disable FloatProperty(Value=0.25)
        -> Disable Bonsai.Scripting.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> Disable PublishSubject TrialStartTime

        Disable Bonsai.Numerics.CreateRandom(Seed=nil)
        -> Disable Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=1, Upper=5)
        -> Disable BehaviorSubject DelayDistribution

        Disable FloatProperty(Value=1)
        -> Disable Bonsai.Scripting.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> Disable BehaviorSubject DelayPeriod

        FloatProperty(Value=0.25)
        -> Bonsai.Scripting.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> BehaviorSubject ITIPeriod

        Disable FloatProperty(Value=0.5)
        -> Disable Bonsai.Scripting.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> Disable BehaviorSubject ReportResponse

    Bonsai.Shaders.Timer(DueTime=PT0.25S)
    -> SelectMany Trial
        WorkflowInput Source1
        -> SelectMany FirstGrating
            SubscribeSubject DrawGrating => #0
            Bonsai.Shaders.Timer(DueTime=PT0.5S) => #1
            SubscribeSubject SpatialFrequencyDistribution
            -> Bonsai.Numerics.Distributions.Sample
            -> Multiply(Operand=IntProperty(Value=2)) => #4
            SubscribeSubject FirstSpatialFrequency
            -> PropertyMapping(SpatialFrequency) => #6
            #0, #6 -> IncludeWorkflow => #7
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=0
              LocationY=0
              Layer=0
              Angle=0
              SpatialFrequency=14
              TemporalFrequency=0
              Phase=0
              SquareWave=false
              Contrast=1
              DutyCycle=nil
              Radius=1
              Aperture=0
              Opacity=1
              ExtentX=1
              ExtentY=1
            #7, #1 -> TakeUntil
            -> Last => #9
            SubscribeSubject LowerBound => #10
            #4, #10 -> Zip
            -> Add
            -> Take(Count=1)
            -> MulticastSubject FirstSpatialFrequency => #14
            #14, #9 -> Sample
            -> Take(Count=1)
            -> WorkflowOutput

            BooleanProperty(Value=false)
            -> MulticastSubject OkToPress?
        -> SelectMany Delay
            SubscribeSubject DelayDistribution
            -> Bonsai.Numerics.Distributions.Sample
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> MulticastSubject DelayPeriod

            WorkflowInput Source1 => #4
            Disable SubscribeSubject DelayPeriod
            -> Disable PropertyMapping(DueTime) => #6
            #4, #6 -> Bonsai.Shaders.Delay(DueTime=PT0.5S)
            -> Take(Count=1)
            -> WorkflowOutput

            BooleanProperty(Value=false)
            -> MulticastSubject OkToPress?
        -> SelectMany SecondGrating => #3
            WorkflowInput Source1 => #0
            SubscribeSubject DrawGrating => #1
            Bonsai.Shaders.Timer(DueTime=PT0.5S) => #2
            SubscribeSubject SecondSpatialFrequency
            -> PropertyMapping(SpatialFrequency) => #4
            #1, #4 -> IncludeWorkflow => #5
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=0
              LocationY=0
              Layer=0
              Angle=0
              SpatialFrequency=16
              TemporalFrequency=0
              Phase=0
              SquareWave=false
              Contrast=1
              DutyCycle=nil
              Radius=1
              Aperture=0
              Opacity=1
              ExtentX=1
              ExtentY=1
            #5, #2 -> TakeUntil
            -> Last => #7
            ExternalizedMapping(lower) => #8
            ExternalizedMapping(upper) => #9
            SubscribeSubject FirstSpatialFrequency
            -> Take(Count=1) => #11
            #11, #8, #9 -> Condition Middles
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=lower)) => #1
                #0, #1 -> GreaterThan(Operand=IntProperty(Value=8)) => #2
                ExternalizedMapping(Value(DisplayName=upper)) => #3
                #0, #3 -> LessThan(Operand=IntProperty(Value=16)) => #4
                #2, #4 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            -> SelectMany +/- => #13
                Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample => #1
                -> Condition 0
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=0))
                    -> WorkflowOutput
                -> IntProperty(Value=2) => #3
                #1 -> Condition 1
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> IntProperty(Value=-2) => #5
                #3, #5 -> Merge => #6
                WorkflowInput Source1 => #7
                #7, #6 -> Zip
                -> Add
                -> WorkflowOutput
            #11, #8 -> Condition 8
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=lower)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=8))
                -> WorkflowOutput
            -> Add(Operand=IntProperty(Value=2)) => #15
            #11, #9 -> Condition 16
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=upper)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=16))
                -> WorkflowOutput
            -> Add(Operand=IntProperty(Value=-2)) => #17
            #15, #13, #17 -> Merge
            -> MulticastSubject SecondSpatialFrequency => #19
            #19, #7 -> Sample => #20
            #0, #20 -> Zip
            -> Take(Count=1)
            -> WorkflowOutput

            BooleanProperty(Value=false)
            -> MulticastSubject OkToPress?
        SubscribeSubject EarlyPress
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Disable Take(Count=1)
        -> IntProperty(Value=-1)
        -> MulticastSubject TrialOutcome => #8
        #3, #8 -> TakeUntil
        -> SelectMany Response
            WorkflowInput Source1
            -> LessThan => #1
            Bonsai.Shaders.Input.KeyDown(Key=Left, Modifiers=nil)
            -> BooleanProperty(Value=false) => #3
            Bonsai.Shaders.Input.KeyDown(Key=Right, Modifiers=nil)
            -> BooleanProperty(Value=true) => #5
            #3, #5 -> Merge
            -> First => #7
            #1, #7 -> Zip
            -> Equal
            -> Take(Count=1)
            -> WorkflowOutput

            SubscribeSubject PromptResponse
            -> IncludeWorkflow
              Path=BonVision:Primitives.DrawText.bonsai
              Text="A < B or A > B\n"
              Font="Arial Narrow, 72pt"
              Alignment=Center
              LineAlignment=Center
              TextRenderingHint=AntiAliasGridFit
              Color(Val0=255, Val1=255, Val2=255, Val3=255)
              ExtentX=1
              ExtentY=1
              LocationX=0
              LocationY=0
              Layer=0
              Angle=0
            -> Bonsai.Shaders.DelaySubscription(DueTime=PT0.5S)

            BooleanProperty(Value=true)
            -> MulticastSubject OkToPress?
        -> SelectMany Feedback => #11
            WorkflowInput Source1
            -> MulticastSubject Correct => #1
            SubscribeSubject DrawQuad => #2
            Bonsai.Shaders.Timer(DueTime=PT0.6S) => #3
            SubscribeSubject Correct
            -> Bonsai.Scripting.ExpressionTransform
              Expression: it ? new(0 as R, 1 as G, 0 as B) : new(1 as R, 0 as G, 0 as B)
            -> PropertyMapping(ColorR(Selector=R), ColorG(Selector=G), ColorB(Selector=B)) => #6
            #2, #6 -> IncludeWorkflow(Path=BonVision:Primitives.DrawQuad.bonsai, ExtentX=1, ExtentY=1, LocationX=0, LocationY=0, Layer=0, Angle=0, ColorR=1, ColorG=0, ColorB=0, ColorA=1) => #7
            #7, #3 -> TakeUntil
            -> Last => #9
            #1, #9 -> Sample
            -> Bonsai.Scripting.ExpressionTransform
              Expression: it ? 1 : 0
            -> MulticastSubject TrialOutcome
            -> Take(Count=1)
            -> WorkflowOutput

            BooleanProperty(Value=false)
            -> MulticastSubject OkToPress?
        #11, #8 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany ITI
        WorkflowInput Source1 => #0
        SubscribeSubject ITIPeriod => #1
        #0, #1 -> WithLatestFrom
        -> InputMapping(Selector=Item1, DueTime(Selector=Item2))
        -> Bonsai.Shaders.Delay(DueTime=PT0.25S)
        -> Take(Count=1)
        -> WorkflowOutput

        BooleanProperty(Value=false)
        -> MulticastSubject OkToPress?
    -> Take(Count=1)
    -> Sink PrepNewTrial
        WorkflowInput Source1
        -> BooleanProperty(Value=false)
        -> MulticastSubject EarlyPress
        -> BooleanProperty(Value=true)
        -> MulticastSubject TrialEnd
        -> WorkflowOutput
    -> Repeat => #9
    SubscribeSubject ExpEnd => #10
    #9, #10 -> TakeUntil
    -> WorkflowOutput

    GroupWorkflow Save_Data
        SubscribeSubject FirstSpatialFrequency => #0
        SubscribeSubject SecondSpatialFrequency => #1
        SubscribeSubject Correct => #2
        SubscribeSubject DelayPeriod => #3
        SubscribeSubject ITIPeriod => #4
        SubscribeSubject TrialOutcome => #5
        #0, #1, #3, #5, #2, #4 -> CombineLatest => #6
        SubscribeSubject TrialEnd => #7
        #6, #7 -> Sample
        -> Timestamp => #9
        -> MemberSelector(Selector=Value) => #10
        #9 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #11
        #10, #11 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1.Item1 as First_Spatial_Frequency,
            Item1.Item2 as Second_Spatial_Frequency,
            Item1.Item3 as Delay_Period,
            Item1.Item4 as Trial_Outcome,
            Item1.Item5 as Response,
            Item1.Item6 as ITI_Period,
            Item2 as Time
            )
        -> Bonsai.IO.CsvWriter(FileName=grating_data.csv, Append=true, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
        -> WorkflowOutput

    GroupWorkflow TrackEarlyPress
        Bonsai.Shaders.Input.KeyDown(Key=Left, Modifiers=nil)
        -> BooleanProperty(Value=true) => #1
        Bonsai.Shaders.Input.KeyDown(Key=Right, Modifiers=nil)
        -> BooleanProperty(Value=true) => #3
        #1, #3 -> Merge
        -> Take(Count=1) => #5
        SubscribeSubject OkToPress? => #6
        #5, #6 -> Zip
        -> NotEqual
        -> Condition => #9
            WorkflowInput Source1
            -> WorkflowOutput
        SubscribeSubject WriteError
        -> IncludeWorkflow => #11
          Path=BonVision:Primitives.DrawText.bonsai
          Text="Early Response!"
          Font="Arial Narrow, 72pt"
          Alignment=Center
          LineAlignment=Center
          TextRenderingHint=AntiAliasGridFit
          Color(Val0=255, Val1=255, Val2=255, Val3=255)
          ExtentX=1
          ExtentY=1
          LocationX=0
          LocationY=0
          Layer=0
          Angle=0
        #11, #9 -> SubscribeWhen => #12
        Bonsai.Shaders.Timer(DueTime=PT1S) => #13
        #12, #13 -> TakeUntil
        -> Repeat
        -> BooleanProperty(Value=true)
        -> BehaviorSubject EarlyPress

GroupWorkflow HarpBeh
  Description:
    Workflows to connect and interact with Harp Behaviour Module

    Will initialise device and create subjects:

    BehModuleInput -- Messagebytes -- output from devicecommand node to issue outputs to harp board

    BehBytes -- bytesarray -- messagebytes output to be written to .bin file with MatrixWriter node

    BeamXbool -- bool -- readout  for hi/lo state of photogate/lickspout connected to ethernet breakout ports
  Workflow
    BooleanProperty(Value=false)
    -> BehaviorSubject Beam0Bool
    -> BehaviorSubject Beam1Bool
    -> BehaviorSubject Beam2Bool

    BooleanProperty(Value=false)
    -> Bonsai.Harp.Format(MessageType=Write, Address=32, PayloadType=U8)
    -> BehaviorSubject BehModule

    ByteProperty(Value=0)
    -> ToArray
    -> BehaviorSubject BehBytes

    SubscribeSubject BehModule
    -> Skip(Count=1)
    -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM4) => #12
    Disable SubscribeSubject Emulate
    -> Disable Equal(Operand=BooleanProperty(Value=false))
    -> Disable Condition => #15
        WorkflowInput Source1
        -> WorkflowOutput
    #12, #15 -> Disable SubscribeWhen => #16
    -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke0InfraRedBeam)
    -> MulticastSubject Beam0Bool
    #16 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke1InfraRedBeam)
    -> MulticastSubject Beam1Bool
    #16 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke2InfraRedBeam)
    -> MulticastSubject Beam2Bool
    #16 -> MemberSelector(Selector=MessageBytes)
    -> MulticastSubject BehBytes

    SubscribeSubject BehBytes
    -> Bonsai.Dsp.MatrixWriter(Path=C:\bonsai\bonsaiprotocols\base4harp\Beh_Hit_Data.bin, Suffix=FileCount, Overwrite=false, Layout=ColumnMajor)

    Disable GroupWorkflow Emulate(Description="Runs when emulate is True")
        Bonsai.Windows.Input.KeyDown(Filter=Down, SuppressRepetitions=false)
        -> BooleanProperty(Value=true) => #1
        Bonsai.Windows.Input.KeyUp(Filter=Down)
        -> BooleanProperty(Value=false) => #3
        #1, #3 -> Merge => #4
        SubscribeSubject Emulate
        -> Condition => #6
            WorkflowInput Source1
            -> WorkflowOutput
        #4, #6 -> SubscribeWhen
        -> MulticastSubject Beam0Bool

        Bonsai.Windows.Input.KeyDown(Filter=Up, SuppressRepetitions=false)
        -> BooleanProperty(Value=true) => #10
        Bonsai.Windows.Input.KeyUp(Filter=Up)
        -> BooleanProperty(Value=false) => #12
        #10, #12 -> Merge => #13
        SubscribeSubject Emulate
        -> Condition => #15
            WorkflowInput Source1
            -> WorkflowOutput
        #13, #15 -> SubscribeWhen
        -> MulticastSubject Beam1Bool

        Bonsai.Windows.Input.KeyDown(Filter=D2, SuppressRepetitions=false)
        -> BooleanProperty(Value=true) => #19
        Bonsai.Windows.Input.KeyUp(Filter=D2)
        -> BooleanProperty(Value=false) => #21
        #19, #21 -> Merge => #22
        SubscribeSubject Emulate
        -> Condition => #24
            WorkflowInput Source1
            -> WorkflowOutput
        #22, #24 -> SubscribeWhen
        -> MulticastSubject Beam2Bool

        Disable Bonsai.Windows.Input.KeyDown(Filter=None, SuppressRepetitions=false)
        -> Disable Bonsai.Audio.PlaySource(DeviceName="Generic Software on Speakers (Realtek High Definition Audio(SST))")

        Bonsai.Audio.CreateAudioContext(SampleRate=0, Refresh=0, Position(X=0, Y=0, Z=0), Velocity(X=0, Y=0, Z=0), Direction(X=-0, Y=-0, Z=-1), Up(X=0, Y=1, Z=0), Gain=1)
        -> Bonsai.Audio.AudioResources
          Buffers
            BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=i03_WhiteNoise, FileName=C:\bonsai\bonsaiprotocols\Sound\toSoundCard\03_WhiteNoise.wav)
            BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=i05_RewardTone_32bit_stereo_nohead, FileName=C:\Users\Dammy\Documents\HarpSoundCard\Interface\toSoundCard\i05_RewardTone_32bit_stereo_nohead.bin)
            BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=i05_GoCue, FileName=C:\Users\Dammy\Documents\HarpSoundCard\Interface\toSoundCard\i05_GoCue.bin)
            BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=i07_ViolationTone, FileName=C:\Users\Dammy\Documents\HarpSoundCard\Interface\toSoundCard\i07_ViolationTone.bin)
            BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=i08_TimeoutTone, FileName=C:\Users\Dammy\Documents\HarpSoundCard\Interface\toSoundCard\i08_TimeoutTone.bin)
            BufferConfiguration=Bonsai.Audio.SoundBuffer(Name=i30_stop, FileName=C:\Users\Dammy\Documents\HarpSoundCard\Interface\toSoundCard\i30_stop.bin)
          Sources
            SourceConfiguration
              Name=WhiteNoise
              BufferName=i02_WhiteNoise
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Initial
            SourceConfiguration
              Name=RewardTone
              BufferName=i05_RewardTone_32bit_stereo_nohead
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Initial
            SourceConfiguration
              Name=GoCue
              BufferName=i05_GoCue
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Initial
            SourceConfiguration
              Name=ViolTone
              BufferName=i07_ViolationTone
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Initial
            SourceConfiguration
              Name=TimeoutTone
              BufferName=i08_TimeoutTone
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Initial
            SourceConfiguration
              Name=Stop
              BufferName=i30_stop
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Initial
        -> Bonsai.Resources.LoadResources

        SubscribeSubject SoundIndex => #32
        SubscribeSubject Soundcard?
        -> Condition => #34
            WorkflowInput Source1
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        #32, #34 -> SubscribeWhen => #35
        -> Condition 2
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=WhiteNoise))
        #35 -> Condition 2
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=WhiteNoise))
        #35 -> Condition 2
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        -> Bonsai.Audio.PlaySource(SourceName(string=WhiteNoise))

        BooleanProperty(Value=false)
        -> BehaviorSubject Emulate

GroupWorkflow HarpSoundCard
    SubscribeSubject PlaySound
    -> Skip(Count=1) => #1
    -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM3) => #2
    SubscribeSubject Soundcard?
    -> Condition => #4
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=true))
        -> WorkflowOutput
    SubscribeSubject SoundIndex
    -> Skip(Count=1)
    -> Timestamp
    -> MemberSelector(Selector=Timestamp) => #8
    Disable SubscribeSubject Emulate
    -> Disable Equal(Operand=BooleanProperty(Value=false))
    -> Disable Condition => #11
        WorkflowInput Source1
        -> WorkflowOutput
    #2, #11 -> Disable SubscribeWhen => #12
    #12, #4 -> SubscribeWhen
    #1 -> Timestamp
    -> MemberSelector(Selector=Timestamp) => #15
    #15, #8 -> Zip
    -> Subtract

    IntProperty(Value=0)
    -> BehaviorSubject SoundIndex

    SubscribeSubject SoundIndex
    -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U16, Payload=0)
    -> BehaviorSubject PlaySound

    ExternalizedMapping(Value(DisplayName=Soundcard?))
    -> BooleanProperty(Value=true)
    -> BehaviorSubject Soundcard?

GroupWorkflow Variables
    IntProperty(Value=80)
    -> BehaviorSubject Stim1Amp

    IntProperty(Value=80)
    -> BehaviorSubject Stim2Amp

    IntProperty(Value=3)
    -> BehaviorSubject StimID

    IntProperty(Value=7)
    -> BehaviorSubject ViolID

    IntProperty(Value=6)
    -> BehaviorSubject GoCueID

    ExternalizedMapping(Value(DisplayName="Stimulus Duration"))
    -> FloatProperty(Value=0.4)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject Stim1Dur
    -> BehaviorSubject Stim2Dur

    ExternalizedMapping(Value(DisplayName="Go Cue Duration"))
    -> FloatProperty(Value=0.4)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject GoCueDur

    FloatProperty(Value=1)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject WaitForResponse

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=1, Upper=3)
    -> BehaviorSubject DelayDistribution

    FloatProperty(Value=1)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject DelayPeriod

    BooleanProperty(Value=false)
    -> BehaviorSubject OkToPress?

    BooleanProperty(Value=false)
    -> BehaviorSubject Correct

    Bonsai.Shaders.RenderFrame
    -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
    -> PublishSubject DrawQuad

    IntProperty(Value=0)
    -> PublishSubject TrialOutcome

    IntProperty(Value=0)
    -> BehaviorSubject FirstLick

    IntProperty(Value=0)
    -> BehaviorSubject SubsequentLick

    Bonsai.Shaders.Input.KeyDown(Key=End, Modifiers=nil)
    -> BehaviorSubject ExpEnd

    BooleanProperty(Value=false)
    -> BehaviorSubject OkToLick?

    TimeSpanProperty(Value=PT0.1S)
    -> ReplaySubject ViolDur(BufferSize=nil)

    Disable TimeSpanProperty(Value=PT2S)
    -> Disable BehaviorSubject "Post-violation Delay"

    Disable IntProperty(Value=0)
    -> Disable BehaviorSubject ViolationCounter

    BooleanProperty(Value=false)
    -> BehaviorSubject EarlyLick

    BooleanProperty(Value=false)
    -> BehaviorSubject TrialEnd

    TimeSpanProperty(Value=PT0.8S)
    -> ReplaySubject RewardDur(BufferSize=nil)

    GroupWorkflow Timestamp
        IntProperty(Value=0)
        -> Timestamp
        -> MemberSelector(Selector=Timestamp)
        -> MemberSelector(Selector=TimeOfDay)
        -> WorkflowOutput
    -> BehaviorSubject RewardToneTime

    IntProperty(Value=5)
    -> BehaviorSubject RewardID

Timer(DueTime=PT0.5S, Period=PT0S)
-> Sink SetSpouts
    SubscribeSubject Beam1Bool
    -> Condition
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> BooleanProperty(Value=true)
    -> MulticastSubject Beam1Bool

    SubscribeSubject Beam2Bool
    -> Condition
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> BooleanProperty(Value=true)
    -> MulticastSubject Beam2Bool
-> Sink GenAmps
    WorkflowInput Source1
    -> SelectMany GenAmp1
        Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=4)
        -> Bonsai.Numerics.Distributions.Sample
        -> Take(Count=1) => #2
        ExternalizedMapping(Value(DisplayName=Spacing)) => #3
        #2, #3 -> Multiply(Operand=IntProperty(Value=8)) => #4
        ExternalizedMapping(Value(DisplayName="Start Amp"))
        -> IntProperty(Value=60) => #6
        #4, #6 -> Zip
        -> Add
        -> WorkflowOutput
    -> MulticastSubject Stim1Amp
    -> SelectMany GenAmp2
        WorkflowInput Source1
        -> Take(Count=1) => #1
        ExternalizedMapping(lower) => #2
        ExternalizedMapping(upper) => #3
        #1, #2, #3 -> Condition Middles
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=lower)) => #1
            #0, #1 -> GreaterThan(Operand=IntProperty(Value=60)) => #2
            ExternalizedMapping(Value(DisplayName=upper)) => #3
            #0, #3 -> LessThan(Operand=IntProperty(Value=92)) => #4
            #2, #4 -> Zip
            -> LogicalAnd
            -> WorkflowOutput
        -> SelectMany +/- => #5
            WorkflowInput Source1 => #0
            Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
            -> Bonsai.Numerics.Distributions.Sample => #2
            -> Condition 0
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> LessThanOrEqual(Operand=DoubleProperty(Value=0.13529787957668304))
                -> WorkflowOutput
            -> IntProperty(Value=8) => #4
            #2 -> Condition 1
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> GreaterThan(Operand=DoubleProperty(Value=0.13529787957668304))
                -> WorkflowOutput
            -> IntProperty(Value=-8) => #6
            #4, #6 -> Merge => #7
            #0, #7 -> Zip
            -> Add
            -> WorkflowOutput
        #1, #2 -> Condition 60
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=lower)) => #1
            #0, #1 -> Equal(Operand=IntProperty(Value=60))
            -> WorkflowOutput
        -> Add(Operand=IntProperty(Value=8)) => #7
        #1, #3 -> Condition 92
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=upper)) => #1
            #0, #1 -> Equal(Operand=IntProperty(Value=92))
            -> WorkflowOutput
        -> Add(Operand=IntProperty(Value=-8)) => #9
        #7, #5, #9 -> Merge
        -> WorkflowOutput
    -> MulticastSubject Stim2Amp
    -> WorkflowOutput
-> SelectMany Trial
    WorkflowInput Source1
    -> Disable SelectMany TrialAvailable
        WorkflowInput Source1
        -> IntProperty(Value=6)
        -> MulticastSubject SoundIndex
        -> Delay(DueTime=PT0.5S)
        -> Take(Count=1)
        -> WorkflowOutput
    -> Disable SelectMany Initiation
        SubscribeSubject Beam0Bool
        -> Skip(Count=1)
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Stim1
        WorkflowInput Source1 => #0
        SubscribeSubject Stim1Amp
        -> PropertyMapping(SoundLevel) => #2
        #0, #2 -> Sink SetLevel => #3
            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
            WorkflowInput Source1 => #1
            #1, #0 -> IntProperty(Value=76)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: (it-107.54)/-0.0764
            -> PropertyMapping(Value)
            -> IntProperty(Value=412)
            -> Sink Left
                WorkflowInput Source1
                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                -> MulticastSubject PlaySound
                -> WorkflowOutput
            -> Sink Right
                WorkflowInput Source1
                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                -> MulticastSubject PlaySound
                -> WorkflowOutput
            -> WorkflowOutput
        SubscribeSubject StimID
        -> PropertyMapping(Value) => #5
        #3, #5 -> IntProperty(Value=3)
        -> MulticastSubject SoundIndex => #7
        SubscribeSubject Stim1Dur
        -> PropertyMapping(DueTime) => #9
        #7, #9 -> Delay(DueTime=PT0.4S)
        -> IntProperty(Value=30)
        -> MulticastSubject SoundIndex
        -> WorkflowOutput

        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #16
        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #19
        #16, #19 -> Merge
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> MulticastSubject EarlyLick
    -> SelectMany DelayPeriod
        SubscribeSubject DelayDistribution
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> MulticastSubject DelayPeriod

        WorkflowInput Source1 => #4
        Disable SubscribeSubject DelayPeriod
        -> Disable PropertyMapping(DueTime) => #6
        #4, #6 -> Delay(DueTime=PT0.5S)
        -> Take(Count=1)
        -> WorkflowOutput

        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #12
        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #15
        #12, #15 -> Merge
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> MulticastSubject EarlyLick
    -> SelectMany Stim2
        WorkflowInput Source1 => #0
        SubscribeSubject Stim2Amp
        -> PropertyMapping(SoundLevel) => #2
        #0, #2 -> Sink SetLevel => #3
            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
            WorkflowInput Source1 => #1
            #1, #0 -> IntProperty(Value=68)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: (it-107.54)/-0.0764
            -> PropertyMapping(Value)
            -> IntProperty(Value=517)
            -> Sink Left
                WorkflowInput Source1
                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                -> MulticastSubject PlaySound
                -> WorkflowOutput
            -> Sink Right
                WorkflowInput Source1
                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                -> MulticastSubject PlaySound
                -> WorkflowOutput
            -> WorkflowOutput
        SubscribeSubject StimID
        -> PropertyMapping(Value) => #5
        #3, #5 -> IntProperty(Value=3)
        -> MulticastSubject SoundIndex => #7
        SubscribeSubject Stim2Dur
        -> PropertyMapping(DueTime) => #9
        #7, #9 -> Delay(DueTime=PT0.4S)
        -> IntProperty(Value=30)
        -> MulticastSubject SoundIndex
        -> Delay(DueTime=PT0.5S)
        -> WorkflowOutput

        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #17
        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #20
        #17, #20 -> Merge
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> MulticastSubject EarlyLick
    -> SelectMany GoCue => #6
        WorkflowInput Source1 => #0
        SubscribeSubject GoCueDur
        -> PropertyMapping(DueTime) => #2
        SubscribeSubject GoCueID
        -> PropertyMapping(Value) => #4
        #0, #4 -> IntProperty(Value=6)
        -> MulticastSubject SoundIndex => #6
        #6, #2 -> Delay(DueTime=PT0.4S)
        -> IntProperty(Value=30)
        -> MulticastSubject SoundIndex
        -> Take(Count=1)
        -> WorkflowOutput

        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #14
        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #17
        #14, #17 -> Merge
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> MulticastSubject EarlyLick
    SubscribeSubject EarlyLick
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1)
    -> Disable IntProperty(Value=0) => #10
    -> BooleanProperty(Value=false)
    -> MulticastSubject Correct
    -> SelectMany ViolTone
        WorkflowInput Source1 => #0
        Disable SubscribeSubject ViolDur
        -> Disable PropertyMapping(DueTime) => #2
        Disable SubscribeSubject ViolID
        -> Disable PropertyMapping(SoundLevel) => #4
        #0, #4 -> Sink SetLevel => #5
            ExternalizedMapping(Value(DisplayName=SoundLevel))
            -> IntProperty(Value=300)
            -> Sink Left
                WorkflowInput Source1
                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                -> MulticastSubject PlaySound
                -> WorkflowOutput
            -> Sink Right
                WorkflowInput Source1
                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                -> MulticastSubject PlaySound
                -> WorkflowOutput
            -> WorkflowOutput
        SubscribeSubject ViolID
        -> PropertyMapping(SoundIndex) => #7
        #5, #7 -> Sink PlayTone => #8
            ExternalizedMapping(Value(DisplayName=SoundIndex)) => #0
            WorkflowInput Source1 => #1
            #1, #0 -> IntProperty(Value=7)
            -> Take(Count=1)
            -> MulticastSubject SoundIndex
            -> WorkflowOutput
        #8, #2 -> Delay(DueTime=PT0.4S)
        -> Sink StopSound
            WorkflowInput Source1
            -> IntProperty(Value=30)
            -> MulticastSubject SoundIndex
            -> WorkflowOutput
        -> WorkflowOutput
    -> IntProperty(Value=-1)
    -> Disable MulticastSubject TrialOutcome
    -> Take(Count=1) => #16
    #6, #10 -> TakeUntil
    -> SelectMany Response
        SubscribeSubject Stim1Amp => #0
        SubscribeSubject Stim2Amp => #1
        #0, #1 -> Zip
        -> LessThan => #3
        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #6
        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #9
        #6, #9 -> Merge
        -> Take(Count=1)
        -> Sink ResetSpouts
            SubscribeSubject Beam1Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BooleanProperty(Value=true)
            -> MulticastSubject Beam1Bool

            SubscribeSubject Beam2Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BooleanProperty(Value=true)
            -> MulticastSubject Beam2Bool
        -> Sink RecordFirstLick
            WorkflowInput Source1
            -> Bonsai.Scripting.ExpressionTransform
              Expression: it? 1 : 2
            -> MulticastSubject FirstLick
            -> WorkflowOutput
        -> Take(Count=1) => #14
        #3, #14 -> Zip
        -> Equal
        -> Disable Delay(DueTime=PT0.5S)
        -> Take(Count=1)
        -> WorkflowOutput

        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #22
        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #25
        #22, #25 -> Merge
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> BooleanProperty(Value=false)
        -> MulticastSubject EarlyLick
    -> SelectMany Feedback
        WorkflowInput Source1
        -> MulticastSubject Correct => #1
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany Success
            SubscribeSubject FirstLick => #0
            -> Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            -> SelectMany RewardRight => #2
                WorkflowInput Source1
                -> SelectMany RewardTone(Description=SoundCard)
                    SubscribeSubject RewardDur
                    -> PropertyMapping(DueTime) => #1
                    WorkflowInput Source1 => #2
                    ExternalizedMapping(SoundLevel) => #3
                    Source2=#2, Source2=#3 -> Sink SetLevel => #4
                        ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                        WorkflowInput Source1 => #1
                        #1, #0 -> IntProperty(Value=80)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=360)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    SubscribeSubject RewardID
                    -> PropertyMapping(Value) => #6
                    #4, #6 -> IntProperty(Value=5)
                    -> Take(Count=1)
                    -> MulticastSubject SoundIndex
                    -> Timestamp
                    -> MemberSelector(Selector=Timestamp.TimeOfDay)
                    -> MulticastSubject RewardToneTime => #12
                    #12, #1 -> Delay(DueTime=PT0.8S)
                    -> WorkflowOutput
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve)
                -> MulticastSubject BehModule
                -> Delay(DueTime=PT0.5S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve)
                -> MulticastSubject BehModule
                -> WorkflowOutput
            #0 -> Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> SelectMany RewardLeft => #4
                WorkflowInput Source1
                -> SelectMany RewardTone(Description=SoundCard)
                    SubscribeSubject RewardDur
                    -> PropertyMapping(DueTime) => #1
                    WorkflowInput Source1 => #2
                    ExternalizedMapping(SoundLevel) => #3
                    Source2=#2, Source2=#3 -> Sink SetLevel => #4
                        ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                        WorkflowInput Source1 => #1
                        #1, #0 -> IntProperty(Value=80)
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: (it-107.54)/-0.0764
                        -> PropertyMapping(Value)
                        -> IntProperty(Value=360)
                        -> Sink Left
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> Sink Right
                            WorkflowInput Source1
                            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                            -> MulticastSubject PlaySound
                            -> WorkflowOutput
                        -> WorkflowOutput
                    SubscribeSubject RewardID
                    -> PropertyMapping(Value) => #6
                    #4, #6 -> IntProperty(Value=5)
                    -> Take(Count=1)
                    -> MulticastSubject SoundIndex
                    -> Timestamp
                    -> MemberSelector(Selector=Timestamp.TimeOfDay)
                    -> MulticastSubject RewardToneTime => #12
                    #12, #1 -> Delay(DueTime=PT0.8S)
                    -> WorkflowOutput
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke1Valve)
                -> MulticastSubject BehModule
                -> Delay(DueTime=PT0.5S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve)
                -> MulticastSubject BehModule
                -> WorkflowOutput
            #4, #2 -> Merge
            -> WorkflowOutput

            Disable SelectMany RewardLeft => #7
                SubscribeSubject Stim1Amp => #0
                SubscribeSubject Stim2Amp => #1
                #0, #1 -> Zip
                -> LessThan
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Delay(DueTime=PT0.5S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke1Valve)
                -> MulticastSubject BehModule
                -> Delay(DueTime=PT0.5S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve)
                -> MulticastSubject BehModule
                -> WorkflowOutput
            Disable SelectMany RewardRight => #8
                SubscribeSubject Stim1Amp => #0
                SubscribeSubject Stim2Amp => #1
                #1, #0 -> Zip
                -> LessThan
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Delay(DueTime=PT0.5S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve)
                -> MulticastSubject BehModule
                -> Delay(DueTime=PT0.5S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve)
                -> MulticastSubject BehModule
                -> WorkflowOutput
            #7, #8 -> Disable Merge
            -> Disable WorkflowOutput
        -> IntProperty(Value=1)
        -> Disable MulticastSubject TrialOutcome => #5
        #1 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> Disable SelectMany "Failure - NothingHappens"
            SubscribeSubject FirstLick => #0
            -> Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            -> SelectMany RewardRight => #2
                WorkflowInput Source1
                -> Delay(DueTime=PT0.5S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve)
                -> MulticastSubject BehModule
                -> Delay(DueTime=PT0S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve)
                -> MulticastSubject BehModule
                -> WorkflowOutput
            #0 -> Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> SelectMany RewardLeft => #4
                WorkflowInput Source1
                -> Delay(DueTime=PT0.5S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke1Valve)
                -> MulticastSubject BehModule
                -> Delay(DueTime=PT0S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve)
                -> MulticastSubject BehModule
                -> WorkflowOutput
            #4, #2 -> Merge
            -> Delay(DueTime=PT1S)
            -> WorkflowOutput
        -> SelectMany "Failure - DelayedReward"
            WorkflowInput Source1
            -> SelectMany SecondChance
                SubscribeSubject Stim1Amp => #0
                SubscribeSubject Stim2Amp => #1
                #0, #1 -> Zip
                -> LessThan => #3
                SubscribeSubject Beam1Bool
                -> Condition
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> BooleanProperty(Value=true) => #6
                SubscribeSubject Beam2Bool
                -> Condition
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> BooleanProperty(Value=false) => #9
                #6, #9 -> Merge
                -> Take(Count=1)
                -> Sink ResetSpouts
                    SubscribeSubject Beam1Bool
                    -> Condition
                        WorkflowInput Source1
                        -> BitwiseNot
                        -> WorkflowOutput
                    -> BooleanProperty(Value=true)
                    -> MulticastSubject Beam1Bool

                    SubscribeSubject Beam2Bool
                    -> Condition
                        WorkflowInput Source1
                        -> BitwiseNot
                        -> WorkflowOutput
                    -> BooleanProperty(Value=true)
                    -> MulticastSubject Beam2Bool
                -> Sink RecordSubsequentLick
                    WorkflowInput Source1
                    -> Bonsai.Scripting.ExpressionTransform
                      Expression: it? 1 : 2
                    -> MulticastSubject SubsequentLick
                    -> WorkflowOutput
                -> Take(Count=1) => #14
                #3, #14 -> Zip
                -> Equal
                -> Take(Count=1)
                -> WorkflowOutput
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany DelayedReward
                SubscribeSubject SubsequentLick => #0
                -> Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=2))
                    -> WorkflowOutput
                -> Delay(DueTime=PT1S)
                -> SelectMany RewardLeft => #3
                    WorkflowInput Source1
                    -> SelectMany RewardTone(Description=SoundCard)
                        SubscribeSubject RewardDur
                        -> PropertyMapping(DueTime) => #1
                        WorkflowInput Source1 => #2
                        ExternalizedMapping(SoundLevel) => #3
                        Source2=#2, Source2=#3 -> Sink SetLevel => #4
                            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                            WorkflowInput Source1 => #1
                            #1, #0 -> IntProperty(Value=80)
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: (it-107.54)/-0.0764
                            -> PropertyMapping(Value)
                            -> IntProperty(Value=360)
                            -> Sink Left
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> Sink Right
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> WorkflowOutput
                        SubscribeSubject RewardID
                        -> PropertyMapping(Value) => #6
                        #4, #6 -> IntProperty(Value=5)
                        -> Take(Count=1)
                        -> MulticastSubject SoundIndex
                        -> Timestamp
                        -> MemberSelector(Selector=Timestamp.TimeOfDay)
                        -> MulticastSubject RewardToneTime => #12
                        #12, #1 -> Delay(DueTime=PT0.8S)
                        -> WorkflowOutput
                    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke1Valve)
                    -> MulticastSubject BehModule
                    -> Delay(DueTime=PT0.5S)
                    -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve)
                    -> MulticastSubject BehModule
                    -> WorkflowOutput
                #0 -> Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> Delay(DueTime=PT1S)
                -> SelectMany RewardRight => #6
                    WorkflowInput Source1
                    -> SelectMany RewardTone(Description=SoundCard)
                        SubscribeSubject RewardDur
                        -> PropertyMapping(DueTime) => #1
                        WorkflowInput Source1 => #2
                        ExternalizedMapping(SoundLevel) => #3
                        Source2=#2, Source2=#3 -> Sink SetLevel => #4
                            ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                            WorkflowInput Source1 => #1
                            #1, #0 -> IntProperty(Value=80)
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: (it-107.54)/-0.0764
                            -> PropertyMapping(Value)
                            -> IntProperty(Value=360)
                            -> Sink Left
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> Sink Right
                                WorkflowInput Source1
                                -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                                -> MulticastSubject PlaySound
                                -> WorkflowOutput
                            -> WorkflowOutput
                        SubscribeSubject RewardID
                        -> PropertyMapping(Value) => #6
                        #4, #6 -> IntProperty(Value=5)
                        -> Take(Count=1)
                        -> MulticastSubject SoundIndex
                        -> Timestamp
                        -> MemberSelector(Selector=Timestamp.TimeOfDay)
                        -> MulticastSubject RewardToneTime => #12
                        #12, #1 -> Delay(DueTime=PT0.8S)
                        -> WorkflowOutput
                    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve)
                    -> MulticastSubject BehModule
                    -> Delay(DueTime=PT0.5S)
                    -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve)
                    -> MulticastSubject BehModule
                    -> WorkflowOutput
                #6, #3 -> Merge
                -> WorkflowOutput
            -> WorkflowOutput
        -> IntProperty(Value=0)
        -> Disable MulticastSubject TrialOutcome => #10
        #5, #10 -> Merge
        -> WorkflowOutput

        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #15
        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #18
        #15, #18 -> Merge
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> BooleanProperty(Value=false)
        -> MulticastSubject EarlyLick
    -> Disable Merge
    -> Disable TakeUntil
    -> Take(Count=1) => #22
    #22, #16 -> Merge
    -> MulticastSubject TrialOutcome
    -> Disable Amb
    -> Take(Count=1)
    -> WorkflowOutput
-> SelectMany ITI
    WorkflowInput Source1
    -> Delay(DueTime=PT0.5S)
    -> Take(Count=1)
    -> WorkflowOutput
-> Sink PrepNewTrial
    WorkflowInput Source1
    -> Disable BooleanProperty(Value=false)
    -> Disable MulticastSubject EarlyLick
    -> BooleanProperty(Value=true)
    -> MulticastSubject TrialEnd
    -> BooleanProperty(Value=false)
    -> MulticastSubject EarlyLick
    -> WorkflowOutput
-> Repeat => #10
SubscribeSubject ExpEnd => #11
#10, #11 -> TakeUntil
-> WorkflowOutput

GroupWorkflow Save_Data
    SubscribeSubject Stim1Amp => #0
    SubscribeSubject Stim2Amp => #1
    SubscribeSubject DelayPeriod => #2
    SubscribeSubject FirstLick => #3
    SubscribeSubject TrialOutcome => #4
    Disable SubscribeSubject Correct => #5
    SubscribeSubject TrialEnd => #6
    Disable SubscribeSubject EarlyLick => #7
    #0, #1, #2, #3, #4, #5, #7 -> CombineLatest => #8
    #8, #6 -> Sample
    -> Timestamp => #10
    -> MemberSelector(Selector=Value) => #11
    #10 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #12
    #11, #12 -> Zip
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1.Item1 as Stim_1_Amp,
        Item1.Item2 as Stim_2_Amp,
        Item1.Item3 as Delay_Period,
        Item1.Item4 as FirstLick,
        Item1.Item5 as TrialOutcome,
        Item2 as Time
        )
    -> Disable Bonsai.IO.CsvWriter(FileName=pwm_data.csv, Append=true, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    -> WorkflowOutput
