WorkflowBuilder(Version=2.7.0)
GroupWorkflow Task_Variables
    BooleanProperty(Value=false)
    -> BehaviorSubject Correct

    IntProperty(Value=0)
    -> PublishSubject TrialOutcome

    IntProperty(Value=0)
    -> BehaviorSubject FirstLick

    Bonsai.Shaders.Input.KeyDown(Key=End, Modifiers=nil)
    -> BehaviorSubject ExpEnd

    BooleanProperty(Value=false)
    -> BehaviorSubject TrialEnd

    FloatProperty(Value=0)
    -> BehaviorSubject Tone

    StringProperty(Value=QP04)
    -> BehaviorSubject MouseID

    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    IntProperty(Value=0)
    -> BehaviorSubject "RewSide "

    IntProperty(Value=0)
    -> BehaviorSubject DelayedReward

    IntProperty(Value=0)
    -> BehaviorSubject Reward

    BooleanProperty(Value=false)
    -> BehaviorSubject AbortTrial

    IntProperty(Value=0)
    -> BehaviorSubject Attempts

    IntProperty(Value=0)
    -> BehaviorSubject CorrectCount

    IntProperty(Value=0)
    -> BehaviorSubject RewardCount

    DoubleProperty(Value=0)
    -> BehaviorSubject Percent_Right_Licks

    IntProperty(Value=0)
    -> BehaviorSubject Time

    IntProperty(Value=0)
    -> BehaviorSubject "Response_Latency (ms)"

    IntProperty(Value=3)
    -> BehaviorSubject StimID

    FloatProperty(Value=0)
    -> BehaviorSubject WN_Amp

    ExternalizedMapping(Value(DisplayName=Visualizer_Window_Size))
    -> IntProperty(Value=30)
    -> BehaviorSubject Visualizer_Window_Size

    DoubleProperty(Value=0)
    -> BehaviorSubject Percent_Correct

    IntProperty(Value=0)
    -> BehaviorSubject Correct_Side

    IntProperty(Value=0)
    -> BehaviorSubject Correct_Side_Count

    BooleanProperty(Value=false)
    -> BehaviorSubject Exp_End

    FloatProperty(Value=0)
    -> BehaviorSubject Stim_Relative

    BooleanProperty(Value=false) => #53
    -> BehaviorSubject Subscribe_Saving
    #53 -> BehaviorSubject Subscribe_Control_Params
    #53 -> BehaviorSubject Subscribe_Camera
    #53 -> BehaviorSubject Subscribe_Soundcard
    #53 -> BehaviorSubject Subscribe_Behaviour
    #53 -> BehaviorSubject Subscribe_Mega
    #53 -> BehaviorSubject Subscribe_Nano
    #53 -> BehaviorSubject Start_Protocol

    IntProperty(Value=0)
    -> BehaviorSubject AirPuff_Side

    IntProperty(Value=0)
    -> BehaviorSubject Trial_State

    Disable StringProperty
    -> Disable BehaviorSubject Animal_ID

GroupWorkflow Subscription_Order
    Bonsai.Shaders.Timer(DueTime=PT1S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject Subscribe_Control_Params
    -> Bonsai.Shaders.Delay(DueTime=PT0.2S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject Subscribe_Saving
    -> Bonsai.Shaders.Delay(DueTime=PT0.2S)
    -> SelectMany Emulator? => #7
        SubscribeSubject Emulator
        -> Disable SubscribeSubject Emulate
        -> WorkflowOutput
    -> Condition OFF
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> BooleanProperty(Value=true)
    -> MulticastSubject Subscribe_Camera
    -> Bonsai.Shaders.Delay(DueTime=PT0.2S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject Subscribe_Soundcard
    -> Bonsai.Shaders.Delay(DueTime=PT0.2S)
    -> SelectMany Emulator? => #15
        SubscribeSubject Arduino
        -> WorkflowOutput
    -> Condition No
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> BooleanProperty(Value=true)
    -> MulticastSubject Subscribe_Behaviour => #18
    #15 -> Condition Yes
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true)
    -> MulticastSubject Subscribe_Nano => #21
    #18, #21 -> Merge
    -> Bonsai.Shaders.Delay(DueTime=PT0.2S) => #23
    #7 -> Condition ON => #24
        WorkflowInput Source1
        -> WorkflowOutput
    #23, #24 -> Merge
    -> BooleanProperty(Value=true)
    -> MulticastSubject Start_Protocol
    -> Disable Bonsai.Shaders.Delay(DueTime=PT0.2S)
    -> Disable Condition Opto_ON
        SubscribeSubject Opto_ON
        -> Disable SubscribeSubject Opto
        -> WorkflowOutput
    -> Disable BooleanProperty(Value=true)
    -> Disable MulticastSubject Subscribe_Mega
    -> WorkflowOutput

GroupWorkflow Params
    Bonsai.IO.CsvReader(FileName=..\Params\Rig_Params.csv, ListSeparator="", SkipRows=0)
    -> ReplaySubject Rig_Params(BufferSize=nil)

    Bonsai.IO.CsvReader(FileName=..\Params\Subject_Params.csv, SkipRows=0)
    -> ReplaySubject Subject_Params(BufferSize=nil)

    SubscribeSubject Rig_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Room_ID
      Script:
        @returns(int)
        def process(value):
          len_output = 3
          param_spacing = 2
          param = 'Room_ID'
          start = value.find(param) + len(param) + param_spacing
          end = start + len_output
          return(int(value[start:end]))
    -> PropertyMapping(Room_ID) => #6
    SubscribeSubject Rig_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Rig_ID
      Script:
        @returns(int)
        def process(value):
          len_output = 2
          param_spacing = 2
          param = 'Rig_ID'
          start = value.find(param) + len(param) + param_spacing
          end = start + len_output
          return(int(value[start:end]))
    -> PropertyMapping(Rig_ID) => #9
    SubscribeSubject Rig_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Left_Valve
      Script:
        @returns(int)
        def process(value):
          len_output = 2
          param_spacing = 2
          param = 'Left_Valve_Time'
          start = value.find(param) + len(param) + param_spacing
          end = start + len_output
          return(int(value[start:end]))
    -> PropertyMapping("LeftValveTime (ms)") => #12
    SubscribeSubject Rig_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Right_Valve
      Script:
        @returns(int)
        def process(value):
          len_output = 2
          param_spacing = 2
          param = 'Right_Valve_Time'
          start = value.find(param) + len(param) + param_spacing
          end = start + len_output
          return(int(value[start:end]))
    -> PropertyMapping("RightValveTime (ms)") => #15
    #6, #9, #12, #15 -> GroupWorkflow DynamicVariables
        ExternalizedMapping(Value(DisplayName="RightValveTime (ms)"))
        -> FloatProperty(Value=40)
        -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds
          Expression: TimeSpan.FromMilliseconds(it)
        -> BehaviorSubject RightValveTime

        ExternalizedMapping(Value(DisplayName="LeftValveTime (ms)"))
        -> FloatProperty(Value=40)
        -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds
          Expression: TimeSpan.FromMilliseconds(it)
        -> BehaviorSubject LeftValveTime

        ExternalizedMapping(Value(DisplayName=Room_ID))
        -> IntProperty(Value=404)
        -> BehaviorSubject Room_ID

        ExternalizedMapping(Value(DisplayName=Rig_ID))
        -> IntProperty(Value=40)
        -> BehaviorSubject Rig_ID

    SubscribeSubject Rig_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Beh
      Script:
        @returns(str)
        def process(value):
          len_output = 4
          param_spacing = 2
          param = 'Harp_Beh_Port'
          start = value.find(param) + len(param) + param_spacing
          end = start + len_output
          return(value[start:end])
    -> PropertyMapping(HARP_Port) => #19
    SubscribeSubject Rig_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Arduino_Port
      Script:
        param = 'Arduino_Port'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> PropertyMapping(Nano_Port) => #22
    SubscribeSubject Rig_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Sound_Card
      Script:
        @returns(str)
        def process(value):
          len_output = 4
          param_spacing = 2
          param = 'Sound_Card_Port'
          start = value.find(param) + len(param) + param_spacing
          end = start + len_output
          return(value[start:end])
    -> PropertyMapping(PortName) => #25
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Emulator => #27
      Script:
        param = 'Emulator'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> Equal(Operand=StringProperty(Value=True))
    -> Condition => #29
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #30
    #29 -> BooleanProperty(Value=false) => #31
    #27 -> Equal(Operand=StringProperty(Value=False))
    -> Condition => #33
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #34
    #30, #34 -> Merge
    -> PropertyMapping(Emulate) => #36
    #33 -> BooleanProperty(Value=true) => #37
    #31, #37 -> Merge
    -> PropertyMapping(Soundcard?) => #39
    #25, #39 -> GroupWorkflow HarpSoundCard
        SubscribeSubject Volume
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: uint16(it)
        -> Sink
            WorkflowInput Source1
            -> Bonsai.Harp.Format(MessageType=Write, Address=34, PayloadType=U8)
            -> WorkflowOutput
        -> Bonsai.Harp.Format(MessageType=Write, Address=35, PayloadType=U8) => #3
        ExternalizedMapping(PortName) => #4
        SubscribeSubject Stim_Relative => #5
        -> Condition WN => #6
            SubscribeSubject Stim_Type => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=WN))
            -> WorkflowOutput
        -> Condition Speaker_Calib
            SubscribeSubject Speaker_Calib
            -> WorkflowOutput
        -> SelectMany Calib_Mapping
            WorkflowInput Source1
            -> Add(Operand=FloatProperty(Value=1))
            -> Multiply(Operand=FloatProperty(Value=32))
            -> Divide(Operand=FloatProperty(Value=2))
            -> Add(Operand=FloatProperty(Value=50))
            -> MulticastSubject WN_Amp
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany Convert_To_Bonsai_Amp => #9
            SubscribeSubject Speaker_Y_Incercept => #0
            SubscribeSubject Speaker_Slope
            -> PropertyMapping(Value) => #2
            SubscribeSubject WN_Amp => #3
            #3, #0 -> Zip
            -> Subtract => #5
            #5, #2 -> Divide(Operand=DoubleProperty(Value=1.3840476180425894))
            -> Take(Count=1)
            -> WorkflowOutput
        #6 -> Condition No_Speaker_Calib
            SubscribeSubject Speaker_Calib
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany No_Calib_Mapping
            WorkflowInput Source1
            -> Add(Operand=FloatProperty(Value=1))
            -> Multiply(Operand=FloatProperty(Value=32))
            -> Divide(Operand=FloatProperty(Value=2))
            -> Add(Operand=FloatProperty(Value=60))
            -> MulticastSubject WN_Amp
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany Fire_Raw_Amp => #12
            SubscribeSubject WN_Amp
            -> PropertyMapping(Value)
            -> DoubleProperty(Value=76)
            -> Take(Count=1)
            -> WorkflowOutput
        #9, #12 -> Merge
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: (it-107.54)/-0.0764
        -> PropertyMapping(Value)
        -> IntProperty(Value=620) => #16
        -> SelectMany Left => #17
            WorkflowInput Source1
            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
            -> WorkflowOutput
        #16 -> SelectMany Right => #18
            WorkflowInput Source1
            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
            -> WorkflowOutput
        #17, #18 -> Zip
        -> SelectMany Play_WN => #20
            IntProperty(Value=3)
            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U16, Payload=0)
            -> Take(Count=1)
            -> WorkflowOutput
        SubscribeSubject Stim_Dur
        -> PropertyMapping(DueTime) => #22
        SubscribeSubject Stim_Dur
        -> PropertyMapping(DueTime) => #24
        #20, #24 -> Delay(DueTime=PT0.3S)
        -> SelectMany Stop_WN => #26
            IntProperty(Value=30)
            -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U16, Payload=0)
            -> Take(Count=1)
            -> WorkflowOutput
        #17, #18, #20, #26 -> Merge
        -> Skip(Count=3) => #28
        #5 -> Condition PT => #29
            SubscribeSubject Stim_Type => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=PT))
            -> WorkflowOutput
        -> SelectMany Map_Freq
            WorkflowInput Source1
            -> Add(Operand=FloatProperty(Value=1)) => #1
            ExternalizedMapping(Value(DisplayName=Ref_Octave))
            -> FloatProperty(Value=0)
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(float)
                def process(value):
                  import math
                  reference_freq = 4000
                  return math.log((2**value) * reference_freq)/math.log(2)
            -> PropertyMapping(Value) => #5
            #1, #5 -> Add(Operand=FloatProperty(Value=11.9657841))
            -> WorkflowOutput
        -> Sink Map_Tone
            WorkflowInput Source1
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(float)
                def process(value):
                  result =  (2**value) / 1000
                  return result
            -> MulticastSubject Tone
            -> WorkflowOutput
        -> Skip(Count=1)
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            @returns(float)
            def process(value):
              return 2**value
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: uint16(it)
        -> Bonsai.Harp.Format(MessageType=Write, Address=32, PayloadType=U16) => #35
        #22, #29 -> Delay(DueTime=PT0.3S)
        -> IntProperty(Value=3)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: byte(it)
        -> Bonsai.Harp.Format(MessageType=Write, Address=33, PayloadType=U8) => #39
        #35, #39, #3 -> Merge => #40
        #28, #40 -> Merge => #41
        #41, #4 -> Bonsai.Harp.Device(PortName=COM8, DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false) => #42
        SubscribeSubject Subscribe_Soundcard
        -> Condition => #44
            WorkflowInput Source1
            -> WorkflowOutput
        #42, #44 -> SubscribeWhen
        #41 -> Timestamp
        -> BehaviorSubject Emulator_Vis

        IntProperty(Value=0)
        -> BehaviorSubject SoundIndex

        ExternalizedMapping(Value(DisplayName=Soundcard?))
        -> BooleanProperty(Value=false)
        -> BehaviorSubject Soundcard?

        FloatProperty(Value=11.5)
        -> BehaviorSubject Freq

        IntProperty(Value=90)
        -> BehaviorSubject Volume

        IntProperty(Value=3)
        -> BehaviorSubject StopSound
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Arduino => #42
      Script:
        param = 'Arduino'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> Equal(Operand=StringProperty(Value=True))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #45
    #42 -> Equal(Operand=StringProperty(Value=False))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #48
    #45, #48 -> Merge
    -> PropertyMapping(Arduino) => #50
    #36, #19, #22, #50 -> GroupWorkflow HarpBeh
      Description:
        Workflows to connect and interact with Harp Behaviour Module

        Will initialise device and create subjects:

        BehModuleInput -- Messagebytes -- output from devicecommand node to issue outputs to harp board

        BehBytes -- bytesarray -- messagebytes output to be written to .bin file with MatrixWriter node

        BeamXbool -- bool -- readout  for hi/lo state of photogate/lickspout connected to ethernet breakout ports
      Workflow
        ExternalizedMapping(Value(DisplayName=Emulate))
        -> BooleanProperty(Value=true)
        -> BehaviorSubject Emulator

        ExternalizedMapping(Value(DisplayName=Arduino))
        -> BooleanProperty(Value=true)
        -> BehaviorSubject Arduino

        BooleanProperty(Value=false) => #6
        -> BehaviorSubject Left_Valve
        #6 -> BehaviorSubject Right_Valve

        SubscribeSubject Left_Valve => #9
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Valve) => #11
        #9 -> Condition => #12
            WorkflowInput Source1
            -> WorkflowOutput
        -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke1Valve) => #13
        SubscribeSubject Right_Valve => #14
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke2Valve) => #16
        #14 -> Condition => #17
            WorkflowInput Source1
            -> WorkflowOutput
        -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve) => #18
        #11, #13, #16, #18 -> Merge
        -> MulticastSubject BehModule
        #12 -> Bonsai.Scripting.Expressions.ExpressionTransform C => #21
          Expression: 'C'
        #17 -> Bonsai.Scripting.Expressions.ExpressionTransform A => #22
          Expression: 'A'
        #21, #22 -> Merge
        -> MulticastSubject Arduino_Command

        ExternalizedMapping(PortName(DisplayName=HARP_Port))
        -> GroupWorkflow HARP
            BooleanProperty(Value=false)
            -> Bonsai.Harp.Format(MessageType=Write, Address=32, PayloadType=U8)
            -> BehaviorSubject BehModule

            SubscribeSubject BehModule
            -> Skip(Count=1) => #4
            ExternalizedMapping(PortName) => #5
            #4, #5 -> GroupWorkflow Device_Emulator
                WorkflowInput Source1 => #0
                ExternalizedMapping(PortName) => #1
                #0, #1 -> Bonsai.Harp.Device(PortName="NaN,", DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false) => #2
                SubscribeSubject Subscribe_Behaviour
                -> Condition => #4
                    WorkflowInput Source1
                    -> WorkflowOutput
                #2, #4 -> SubscribeWhen => #5
                -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port0) => #6
                SubscribeSubject Emulator => #7
                -> PropertyMapping(Emulate)
                -> GroupWorkflow Poke_0_Emulator => #9
                    ExternalizedMapping(Value(DisplayName=Emulate))
                    -> BooleanProperty(Value=true) => #1
                    ExternalizedMapping(Value(DisplayName=Filter))
                    -> PropertySource<Bonsai.Windows.Input.KeyDown,System.Windows.Forms.Keys>(MemberName=Filter, Value=D0) => #3
                    -> PropertyMapping(Filter) => #4
                    ExternalizedMapping(SuppressRepetitions) => #5
                    #4, #5 -> Bonsai.Windows.Input.KeyDown(Filter=D0, SuppressRepetitions=true)
                    -> BooleanProperty(Value=false) => #7
                    #3 -> PropertyMapping(Filter)
                    -> Bonsai.Windows.Input.KeyUp(Filter=D0)
                    -> BooleanProperty(Value=true) => #10
                    #10, #7 -> Merge => #11
                    #11, #1 -> SubscribeWhen
                    -> WorkflowOutput
                #6, #9 -> Merge
                -> BehaviorSubject Beam0Bool
                -> Disable MulticastSubject Beam0Bool
                #5 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port1) => #13
                #7 -> PropertyMapping(Emulate)
                -> GroupWorkflow Poke_1_Emulator => #15
                    ExternalizedMapping(Value(DisplayName=Emulate))
                    -> BooleanProperty(Value=true) => #1
                    ExternalizedMapping(Value(DisplayName=Filter))
                    -> PropertySource<Bonsai.Windows.Input.KeyDown,System.Windows.Forms.Keys>(MemberName=Filter, Value=D1) => #3
                    -> PropertyMapping(Filter) => #4
                    ExternalizedMapping(SuppressRepetitions) => #5
                    #4, #5 -> Bonsai.Windows.Input.KeyDown(Filter=D1, SuppressRepetitions=true)
                    -> BooleanProperty(Value=false) => #7
                    #3 -> PropertyMapping(Filter)
                    -> Bonsai.Windows.Input.KeyUp(Filter=D1)
                    -> BooleanProperty(Value=true) => #10
                    #10, #7 -> Merge => #11
                    #11, #1 -> SubscribeWhen
                    -> WorkflowOutput
                #13, #15 -> Merge
                -> BehaviorSubject Beam1Bool
                -> Disable MulticastSubject Beam1Bool
                #5 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port2) => #19
                #7 -> PropertyMapping(Emulate)
                -> GroupWorkflow Poke_2_Emulator => #21
                    ExternalizedMapping(Value(DisplayName=Emulate))
                    -> BooleanProperty(Value=true) => #1
                    ExternalizedMapping(Value(DisplayName=Filter))
                    -> PropertySource<Bonsai.Windows.Input.KeyDown,System.Windows.Forms.Keys>(MemberName=Filter, Value=D2) => #3
                    -> PropertyMapping(Filter) => #4
                    ExternalizedMapping(SuppressRepetitions) => #5
                    #4, #5 -> Bonsai.Windows.Input.KeyDown(Filter=D2, SuppressRepetitions=true)
                    -> BooleanProperty(Value=false) => #7
                    #3 -> PropertyMapping(Filter)
                    -> Bonsai.Windows.Input.KeyUp(Filter=D2)
                    -> BooleanProperty(Value=true) => #10
                    #10, #7 -> Merge => #11
                    #11, #1 -> SubscribeWhen
                    -> WorkflowOutput
                #19, #21 -> Merge
                -> BehaviorSubject Beam2Bool
                -> Disable MulticastSubject Beam2Bool

        ExternalizedMapping(Nano_Port)
        -> GroupWorkflow Ardunio
            Bonsai.IO.SerialStringRead(PortName=ArduinoNano, NewLine=\n)
            -> BufferCount(Count=3, Skip=nil)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                it[0] as ID,
                Convert.ToInt32(it[1]) == 1 as State,
                Convert.ToSingle(it[2]) as time
                )
            -> Bonsai.Shaders.DelaySubscription(DueTime=PT1S) => #3
            SubscribeSubject Emulator
            -> BooleanProperty(Value=true) => #5
            -> PropertyMapping(Emulate)
            -> GroupWorkflow Poke_1_Emulator => #7
                ExternalizedMapping(Value(DisplayName=Emulate))
                -> BooleanProperty(Value=true) => #1
                ExternalizedMapping(Value(DisplayName=Filter))
                -> PropertySource<Bonsai.Windows.Input.KeyDown,System.Windows.Forms.Keys>(MemberName=Filter, Value=D1) => #3
                -> PropertyMapping(Filter) => #4
                ExternalizedMapping(SuppressRepetitions) => #5
                #4, #5 -> Bonsai.Windows.Input.KeyDown(Filter=D1, SuppressRepetitions=true)
                -> BooleanProperty(Value=false) => #7
                #3 -> PropertyMapping(Filter)
                -> Bonsai.Windows.Input.KeyUp(Filter=D1)
                -> BooleanProperty(Value=true) => #10
                #10, #7 -> Merge => #11
                #11, #1 -> SubscribeWhen
                -> WorkflowOutput
            #5 -> PropertyMapping(Emulate)
            -> GroupWorkflow Poke_2_Emulator => #9
                ExternalizedMapping(Value(DisplayName=Emulate))
                -> BooleanProperty(Value=true) => #1
                ExternalizedMapping(Value(DisplayName=Filter))
                -> PropertySource<Bonsai.Windows.Input.KeyDown,System.Windows.Forms.Keys>(MemberName=Filter, Value=D2) => #3
                -> PropertyMapping(Filter) => #4
                ExternalizedMapping(SuppressRepetitions) => #5
                #4, #5 -> Bonsai.Windows.Input.KeyDown(Filter=D2, SuppressRepetitions=true)
                -> BooleanProperty(Value=false) => #7
                #3 -> PropertyMapping(Filter)
                -> Bonsai.Windows.Input.KeyUp(Filter=D2)
                -> BooleanProperty(Value=true) => #10
                #10, #7 -> Merge => #11
                #11, #1 -> SubscribeWhen
                -> WorkflowOutput
            SubscribeSubject Arduino_Command
            -> Bonsai.IO.SerialStringWrite(PortName=ArduinoNano, NewLine=\n)
            -> Bonsai.Shaders.DelaySubscription(DueTime=PT1S) => #12
            SubscribeSubject Subscribe_Nano
            -> Condition => #14
                WorkflowInput Source1
                -> WorkflowOutput
            ExternalizedMapping(PortName(DisplayName=Nano_Port))
            -> Bonsai.IO.CreateSerialPort
              Name=ArduinoNano
              PortName=NaN
              BaudRate=9600
              Encoding=us-ascii
              Parity=None
              ParityReplace=63
              DataBits=8
              StopBits=One
              Handshake=None
              DiscardNull=false
              DtrEnable=true
              RtsEnable=false
              ReadBufferSize=4096
              WriteBufferSize=2048
              ReceivedBytesThreshold=1
            -> Bonsai.Shaders.DelaySubscription(DueTime=PT1S) => #17
            #17, #14 -> SubscribeWhen
            #3, #14 -> SubscribeWhen => #19
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=ID)
                -> Bonsai.Scripting.IronPython.PythonTransform
                  Script:
                    @returns(bool)
                    def process(value):
                      return "Left input" in value
                -> WorkflowOutput
            -> MemberSelector(Selector=State) => #21
            #21, #7 -> Merge
            -> MulticastSubject Beam1Bool
            #19 -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=ID)
                -> Bonsai.Scripting.IronPython.PythonTransform
                  Script:
                    @returns(bool)
                    def process(value):
                      return "Right input" in value
                -> WorkflowOutput
            -> MemberSelector(Selector=State) => #25
            #25, #9 -> Merge
            -> MulticastSubject Beam2Bool
            #12, #14 -> SubscribeWhen

            IntProperty(Value=0)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: 'T'
            -> BehaviorSubject Arduino_Command

    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Subject_ID
      Script:
        param = 'Subject'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> PropertyMapping(Animal_ID) => #54
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Protocol
      Script:
        param = 'Protocol'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> PropertyMapping(Exp_Name) => #57
    #57, #54 -> GroupWorkflow Control_Parameters
        ExternalizedMapping(Value(DisplayName=Data_Path))
        -> StringProperty(Value=../Data) => #1
        ExternalizedMapping(Value(DisplayName=Exp_Name))
        -> StringProperty(Value=PRO_ANTI) => #3
        ExternalizedMapping(Value(DisplayName=Animal_ID))
        -> StringProperty(Value=QP062)
        -> ReplaySubject Animal_ID(BufferSize=nil) => #6
        IntProperty(Value=0)
        -> Timestamp => #8
        -> MemberSelector(Selector=Timestamp.DateTime.Year) => #9
        #8 -> MemberSelector(Selector=Timestamp.DateTime.Month) => #10
        #8 -> MemberSelector(Selector=Timestamp.Date.Day) => #11
        #9, #10, #11 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1.toString() + "_" + Item2.toString() + "_" + Item3.toString() as date
            )
        -> MemberSelector(Selector=date) => #14
        #1, #3, #6, #14 -> Zip => #15
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Trial_Summary.csv" as Trial_Summary_File_Name
            )
        -> MemberSelector(Selector=Trial_Summary_File_Name)
        -> BehaviorSubject Trial_File_Name => #18
        #15 -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Detected_Licks.csv" as Licks_File_Name
            )
        -> MemberSelector(Selector=Licks_File_Name)
        -> BehaviorSubject Licks_File_Name => #21
        #15 -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Video_data.avi" as Video_File_Name
            )
        -> MemberSelector(Selector=Video_File_Name)
        -> BehaviorSubject Video_File_Name => #24
        #15 -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 + "/" + Item3 + "/" + Item2 +"_"+ Item3 +"_"+ Item4 + "/Video_timestamps.txt" as Video_Timestamps_File_Name
            )
        -> MemberSelector(Selector=Video_Timestamps_File_Name)
        -> BehaviorSubject Video_Timestamps_File_Name => #27
        #18, #21, #24, #27 -> Merge => #28
        SubscribeSubject Subscribe_Control_Params
        -> Condition => #30
            WorkflowInput Source1
            -> WorkflowOutput
        #28, #30 -> SubscribeWhen

    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Stage
      Script:
        param = 'Stage'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> PropertyMapping(Stage) => #61
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Nb_Of_Stim
      Script:
        param = 'Nb_Of_Stim'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> PropertyMapping(Nb_Of_Stim) => #64
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Stim_Type
      Script:
        param = 'Stim_Type'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> PropertyMapping(Stim_Type) => #67
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform AntiBias => #69
      Script:
        param = 'AntiBias'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> Equal(Operand=StringProperty(Value=True))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #72
    #69 -> Equal(Operand=StringProperty(Value=False))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #75
    #72, #75 -> Merge
    -> PropertyMapping(Anti_Bias) => #77
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Speaker-Calib => #79
      Script:
        param = 'Speaker_Calib'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> Equal(Operand=StringProperty(Value=True))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #82
    #79 -> Equal(Operand=StringProperty(Value=False))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #85
    #82, #85 -> Merge
    -> PropertyMapping(Speaker_Calib) => #87
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Stim_Dur
      Script:
        param = 'Stim_Dur'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> PropertyMapping("Stim_Dur (ms)") => #90
    SubscribeSubject Subject_Params
    -> Bonsai.Scripting.IronPython.PythonTransform Rule
      Script:
        param = 'Rule'
        param_type = str
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> PropertyMapping(Rule) => #93
    #67, #61, #64, #77, #87, #90, #93 -> GroupWorkflow Task_Params
        SubscribeSubject Stage => #0
        -> Condition 1
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=FloatProperty(Value=1))
            -> WorkflowOutput
        -> FloatProperty(Value=10) => #2
        #0 -> Condition Not_1
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> NotEqual(Operand=FloatProperty(Value=1))
            -> WorkflowOutput
        -> FloatProperty(Value=2) => #4
        #2, #4 -> Merge
        -> PropertyMapping(Value)
        -> FloatProperty(Value=2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromSeconds
          Expression: TimeSpan.FromSeconds(it)
        -> BehaviorSubject ITI => #9
        SubscribeSubject Start_Protocol
        -> Condition => #11
            WorkflowInput Source1
            -> WorkflowOutput
        #9, #11 -> SubscribeWhen

        ExternalizedMapping(Value(DisplayName=Nb_Of_Stim))
        -> FloatProperty(Value=2)
        -> BehaviorSubject Nb_Of_Stim

        ExternalizedMapping(Value(DisplayName=Anti_Bias))
        -> BooleanProperty(Value=true)
        -> BehaviorSubject Anti_Bias

        ExternalizedMapping(Value(DisplayName=Stim_Type))
        -> StringProperty(Value=WN)
        -> BehaviorSubject Stim_Type

        ExternalizedMapping(Value(DisplayName=Stage))
        -> FloatProperty(Value=4)
        -> BehaviorSubject Stage

        ExternalizedMapping(Value(DisplayName="Stim_Dur (ms)"))
        -> FloatProperty(Value=300)
        -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds
          Expression: TimeSpan.FromMilliseconds(it)
        -> BehaviorSubject Stim_Dur

        ExternalizedMapping(Value(DisplayName="GoCueDur (ms)"))
        -> FloatProperty(Value=300)
        -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds
          Expression: TimeSpan.FromMilliseconds(it)
        -> BehaviorSubject GoCueDur

        SubscribeSubject Stim_Type => #33
        -> Condition PT => #34
            WorkflowInput Source1
            -> Equal(Operand=StringProperty(Value=PT))
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=PT_Boundary)) => #35
        #34, #35 -> FloatProperty(Value=8) => #36
        #33 -> Condition WN => #37
            WorkflowInput Source1
            -> Equal(Operand=StringProperty(Value=WN))
            -> WorkflowOutput
        -> Condition No_Calib => #38
            SubscribeSubject Speaker_Calib
            -> BitwiseNot
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=WN_No_Calib_Boundary)) => #39
        #38, #39 -> FloatProperty(Value=76) => #40
        #37 -> Condition Calib => #41
            SubscribeSubject Speaker_Calib
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=WN_Calib_Boundary)) => #42
        #41, #42 -> FloatProperty(Value=66) => #43
        #36, #40, #43 -> Merge
        -> BehaviorSubject Boundary

        ExternalizedMapping(Value(DisplayName="ResponseWindow (s)"))
        -> FloatProperty(Value=3)
        -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromSeconds
          Expression: TimeSpan.FromSeconds(it)
        -> BehaviorSubject ResponseWindow

        ExternalizedMapping(Value(DisplayName="TimeoutDuration (s)"))
        -> FloatProperty(Value=3)
        -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromSeconds
          Expression: TimeSpan.FromSeconds(it)
        -> BehaviorSubject TimeoutDuration

        ExternalizedMapping(Value(DisplayName=Speaker_Calib))
        -> BooleanProperty(Value=true)
        -> BehaviorSubject Speaker_Calib

        Bonsai.IO.CsvReader(FileName=..\Params\Rig_Params.csv, SkipRows=0) => #57
        -> Bonsai.Scripting.IronPython.PythonTransform Y_Intercept
          Script:
            param = 'Speaker_Y_Intercept'
            param_type = float
            @returns(param_type)
            def process(value):
              param_start = value.find(param + ": ") + len(param + ": ")
              param_end = value.find(",", param_start)
              return(param_type(value[param_start:param_end]))
        -> BehaviorSubject Speaker_Y_Incercept
        #57 -> Bonsai.Scripting.IronPython.PythonTransform Slope
          Script:
            param = 'Speaker_Slope'
            param_type = float
            @returns(param_type)
            def process(value):
              param_start = value.find(param + ": ") + len(param + ": ")
              param_end = value.find(",", param_start)
              return(param_type(value[param_start:param_end]))
        -> BehaviorSubject Speaker_Slope

        ExternalizedMapping(Value(DisplayName=Rule))
        -> StringProperty(Value=Blocks_15)
        -> BehaviorSubject Rule

        ExternalizedMapping(Value(DisplayName="Delay_Period (s)"))
        -> FloatProperty(Value=0.5)
        -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromSeconds
          Expression: TimeSpan.FromSeconds(it)
        -> BehaviorSubject Delay_Period

GroupWorkflow CameraStreaming
    Bonsai.Osc.CreateTcpServer(Name=Emitter, Port=1234, NoDelay=false, AllowNatTraversal=false)

    SubscribeSubject Video_File_Name
    -> PropertyMapping(FileName) => #2
    Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="") => #3
    SubscribeSubject Video_Timestamps_File_Name
    -> PropertyMapping(FileName) => #5
    SubscribeSubject Exp_End
    -> Condition => #7
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject Subscribe_Camera
    -> Condition => #9
        WorkflowInput Source1
        -> WorkflowOutput
    #3, #9 -> SubscribeWhen
    -> Retry => #11
    #11, #2 -> Bonsai.Vision.VideoWriter => #12
      FileName=../Data/QP062/PRO_ANTI_QP062_2023_8_8/Video_data.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=true
      FourCC=FMP4
      FrameRate=60
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    #12, #7 -> TakeUntil
    -> WorkflowOutput
    #11 -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #16
    #16, #5 -> Bonsai.IO.TextWriter(FileName=../Data/QP062/PRO_ANTI_QP062_2023_8_8/Video_timestamps.txt, Suffix=Timestamp, Buffered=true, Overwrite=false, Append=false)
    #11 -> Bonsai.Dsp.ConvertToArray(Depth=nil)
    -> Bonsai.Osc.SendMessage(Connection=Emitter, Address=/tcpimage)

GroupWorkflow Render_Loop
    Bonsai.Shaders.CreateWindow
      Width=1
      Height=1
      VSync=On
      SwapSync=false
      ClearColor=Black
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Minimized
      DisplayDevice=Primary
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false

    Bonsai.Shaders.Timer(DueTime=PT0S)

GroupWorkflow UDP_Client
    Bonsai.Osc.CreateUdpClient(Name=End_Signal, Port=1334, RemoteHostName="", RemotePort=0)

    Bonsai.Osc.ReceiveMessage(Address=/GUI, TypeTag=s, Connection=End_Signal)
    -> Equal(Operand=StringProperty(Value=End_Protocol))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BooleanProperty(Value=true)
    -> MulticastSubject Exp_End

SubscribeSubject ITI
-> PropertyMapping(DueTime)
-> Timer(DueTime=PT2S, Period=PT0S)
-> SelectMany PrepTrial
    WorkflowInput Source1
    -> Sink Set_Spouts_Low
        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject Beam1Bool => #3
        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject Beam2Bool => #7
        #3, #7 -> Merge
        -> WorkflowOutput
    -> Sink Start_Trial
        WorkflowInput Source1
        -> BooleanProperty(Value=false)
        -> MulticastSubject TrialEnd
        -> WorkflowOutput
    -> Sink "Exp_End = False"
        WorkflowInput Source1
        -> BooleanProperty(Value=false)
        -> MulticastSubject Exp_End
        -> WorkflowOutput
    -> WorkflowOutput
-> SelectMany Trial
    SubscribeSubject Stage => #0
    -> Condition Stage_1(Description=Habituation)
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> SelectMany Habituation => #2
        WorkflowInput Source1
        -> SelectMany AirPuff
            GroupWorkflow Coin_Flip => #0
                Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample
                -> WorkflowOutput
            -> Condition Heads
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> SelectMany Puff_Left => #2
                WorkflowInput Source1
                -> SelectMany Pulse_Left
                    Timer(DueTime=PT0S, Period=PT0.075S)
                    -> Take(Count=5)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform G
                      Expression: 'G'
                    -> MulticastSubject Arduino_Command
                    -> Delay(DueTime=PT0.5S)
                    -> WorkflowOutput
                -> IntProperty(Value=0)
                -> MulticastSubject AirPuff_Side
                -> WorkflowOutput
            #0 -> Condition Tails
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> SelectMany Puff_Right => #4
                WorkflowInput Source1
                -> SelectMany Pulse_Right
                    Timer(DueTime=PT0S, Period=PT0.075S)
                    -> Take(Count=5)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform E
                      Expression: 'E'
                    -> MulticastSubject Arduino_Command
                    -> Delay(DueTime=PT0.5S)
                    -> WorkflowOutput
                -> IntProperty(Value=1)
                -> MulticastSubject AirPuff_Side
                -> WorkflowOutput
            #2, #4 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> Delay(DueTime=PT0.3S)
        -> SelectMany Release_Reward
            SubscribeSubject AirPuff_Side => #0
            -> Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> SelectMany RewardLeft => #2
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform C
                  Expression: 'C'
                -> MulticastSubject Arduino_Command
                -> IntProperty(Value=0)
                -> MulticastSubject "RewSide "
                -> WorkflowOutput
            #0 -> Condition
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> SelectMany RewardRight => #4
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform A
                  Expression: 'A'
                -> MulticastSubject Arduino_Command
                -> IntProperty(Value=1)
                -> MulticastSubject "RewSide "
                -> WorkflowOutput
            #2, #4 -> Merge
            -> WorkflowOutput
        -> Disable Sink IncrementTrial
            SubscribeSubject TrialNumber => #0
            IntProperty(Value=1) => #1
            #0, #1 -> Zip
            -> Add
            -> MulticastSubject TrialNumber
            -> WorkflowOutput
        -> SelectMany Write_Missing_Variables
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.IronPython.PythonTransform NaN => #1
              Script:
                from System import Single

                @returns(Single)
                def process(value):
                  return (Single(float.NaN))
            -> MulticastSubject TrialOutcome
            -> IntProperty(Value=0) => #3
            #1 -> MulticastSubject CorrectCount
            -> IntProperty(Value=0) => #5
            #1 -> MulticastSubject "Response_Latency (ms)"
            -> IntProperty(Value=0) => #7
            #1 -> MulticastSubject Trial_State
            -> IntProperty(Value=0) => #9
            #1 -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds => #10
              Expression: TimeSpan.FromMilliseconds(it)
            -> MulticastSubject ResponseWindow
            -> IntProperty(Value=0) => #12
            #10 -> MulticastSubject Delay_Period
            -> IntProperty(Value=0) => #14
            #1 -> MulticastSubject FirstLick
            -> IntProperty(Value=0) => #16
            #1 -> MulticastSubject WN_Amp
            -> IntProperty(Value=0) => #18
            #0 -> BooleanProperty(Value=false) => #19
            -> MulticastSubject Correct
            -> IntProperty(Value=0) => #21
            #19 -> MulticastSubject AbortTrial
            -> IntProperty(Value=0) => #23
            #19 -> MulticastSubject Anti_Bias
            -> IntProperty(Value=0) => #25
            #0 -> StringProperty(Value=NaN)
            -> MulticastSubject Rule
            -> IntProperty(Value=0) => #28
            #3, #5, #7, #9, #16, #18, #12, #14, #21, #23, #25, #28 -> Merge
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    #0 -> Condition Stage_2(Description=Habituation)
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=2))
        -> WorkflowOutput
    -> SelectMany Lick2R => #4
        SubscribeSubject Beam1Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=0) => #2
        SubscribeSubject Beam2Bool
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=1) => #5
        #2, #5 -> Merge
        -> Take(Count=1)
        -> Sink ResetSpouts
            SubscribeSubject Beam1Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BooleanProperty(Value=true)
            -> MulticastSubject Beam1Bool => #3
            SubscribeSubject Beam2Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BooleanProperty(Value=true)
            -> MulticastSubject Beam2Bool => #7
            #3, #7 -> Merge
            -> WorkflowOutput
        -> Sink RecordFirstLick => #9
            WorkflowInput Source1
            -> MulticastSubject FirstLick
            -> WorkflowOutput
        -> Condition Left
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Delay(DueTime=PT0.3S)
        -> SelectMany Puff_Left
            WorkflowInput Source1
            -> SelectMany Pulse_Left
                Timer(DueTime=PT0S, Period=PT0.075S)
                -> Take(Count=5)
                -> Bonsai.Scripting.Expressions.ExpressionTransform G
                  Expression: 'G'
                -> MulticastSubject Arduino_Command
                -> Delay(DueTime=PT0.5S)
                -> WorkflowOutput
            -> IntProperty(Value=0)
            -> MulticastSubject AirPuff_Side
            -> WorkflowOutput
        -> SelectMany RewardLeft => #13
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform C
              Expression: 'C'
            -> MulticastSubject Arduino_Command
            -> IntProperty(Value=0)
            -> MulticastSubject "RewSide "
            -> WorkflowOutput
        #9 -> Condition Right
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> Delay(DueTime=PT0.3S)
        -> SelectMany Puff_Right
            WorkflowInput Source1
            -> SelectMany Pulse_Right
                Timer(DueTime=PT0S, Period=PT0.075S)
                -> Take(Count=5)
                -> Bonsai.Scripting.Expressions.ExpressionTransform E
                  Expression: 'E'
                -> MulticastSubject Arduino_Command
                -> Delay(DueTime=PT0.5S)
                -> WorkflowOutput
            -> IntProperty(Value=1)
            -> MulticastSubject AirPuff_Side
            -> WorkflowOutput
        -> SelectMany RewardRight => #17
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform A
              Expression: 'A'
            -> MulticastSubject Arduino_Command
            -> IntProperty(Value=1)
            -> MulticastSubject "RewSide "
            -> WorkflowOutput
        #13, #17 -> Merge
        -> Disable Sink IncrementTrial
            SubscribeSubject TrialNumber => #0
            IntProperty(Value=1) => #1
            #0, #1 -> Zip
            -> Add
            -> MulticastSubject TrialNumber
            -> WorkflowOutput
        -> SelectMany Write_Missing_Variables
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.IronPython.PythonTransform NaN => #1
              Script:
                from System import Single

                @returns(Single)
                def process(value):
                  return (Single(float.NaN))
            -> MulticastSubject TrialOutcome
            -> IntProperty(Value=0) => #3
            #1 -> MulticastSubject CorrectCount
            -> IntProperty(Value=0) => #5
            #1 -> MulticastSubject "Response_Latency (ms)"
            -> IntProperty(Value=0) => #7
            #1 -> MulticastSubject Trial_State
            -> IntProperty(Value=0) => #9
            #1 -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds => #10
              Expression: TimeSpan.FromMilliseconds(it)
            -> MulticastSubject ResponseWindow
            -> IntProperty(Value=0) => #12
            #10 -> MulticastSubject Delay_Period
            -> IntProperty(Value=0) => #14
            #1 -> MulticastSubject WN_Amp
            -> IntProperty(Value=0) => #16
            #0 -> BooleanProperty(Value=false) => #17
            -> MulticastSubject Correct
            -> IntProperty(Value=0) => #19
            #17 -> MulticastSubject AbortTrial
            -> IntProperty(Value=0) => #21
            #17 -> MulticastSubject Anti_Bias
            -> IntProperty(Value=0) => #23
            #0 -> StringProperty(Value=NaN)
            -> MulticastSubject Rule
            -> IntProperty(Value=0) => #26
            #3, #5, #7, #9, #1, #16, #12, #14, #19, #21, #23, #26 -> Merge
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    #0 -> Condition Stage_3(Description=Habituation)
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=3))
        -> WorkflowOutput
    -> SelectMany Three_And_Three => #6
        WorkflowInput Source1
        -> SelectMany Response
            SubscribeSubject Beam1Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> IntProperty(Value=0) => #2
            SubscribeSubject Beam2Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> IntProperty(Value=1) => #5
            #2, #5 -> Merge
            -> Take(Count=1)
            -> Sink ResetSpouts
                SubscribeSubject Beam1Bool
                -> Condition
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> BooleanProperty(Value=true)
                -> MulticastSubject Beam1Bool => #3
                SubscribeSubject Beam2Bool
                -> Condition
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> BooleanProperty(Value=true)
                -> MulticastSubject Beam2Bool => #7
                #3, #7 -> Merge
                -> WorkflowOutput
            -> Sink RecordFirstLick => #9
                WorkflowInput Source1
                -> MulticastSubject FirstLick
                -> WorkflowOutput
            SubscribeSubject Correct_Side => #10
            #9, #10 -> Zip => #11
            -> MemberSelector(Selector=Item1) => #12
            #11 -> Equal => #13
            -> Condition Correct
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> BooleanProperty(Value=true)
            -> MulticastSubject Correct => #17
            #17, #12 -> Zip
            -> MemberSelector(Selector=Item2) => #19
            -> Condition Left
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> Delay(DueTime=PT0.3S)
            -> SelectMany Puff_Left
                WorkflowInput Source1
                -> SelectMany Pulse_Left
                    Timer(DueTime=PT0S, Period=PT0.075S)
                    -> Take(Count=5)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform G
                      Expression: 'G'
                    -> MulticastSubject Arduino_Command
                    -> Delay(DueTime=PT0.5S)
                    -> WorkflowOutput
                -> IntProperty(Value=0)
                -> MulticastSubject AirPuff_Side
                -> WorkflowOutput
            -> SelectMany RewardLeft => #23
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform C
                  Expression: 'C'
                -> MulticastSubject Arduino_Command
                -> IntProperty(Value=0)
                -> MulticastSubject "RewSide "
                -> WorkflowOutput
            #19 -> Condition Right
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Delay(DueTime=PT0.3S)
            -> SelectMany Puff_Right
                WorkflowInput Source1
                -> SelectMany Pulse_Right
                    Timer(DueTime=PT0S, Period=PT0.075S)
                    -> Take(Count=5)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform E
                      Expression: 'E'
                    -> MulticastSubject Arduino_Command
                    -> Delay(DueTime=PT0.5S)
                    -> WorkflowOutput
                -> IntProperty(Value=1)
                -> MulticastSubject AirPuff_Side
                -> WorkflowOutput
            -> SelectMany RewardRight => #27
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform A
                  Expression: 'A'
                -> MulticastSubject Arduino_Command
                -> IntProperty(Value=1)
                -> MulticastSubject "RewSide "
                -> WorkflowOutput
            #13 -> Condition Incorrect
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> Take(Count=1)
            -> BooleanProperty(Value=false)
            -> MulticastSubject Correct
            -> SelectMany Do_Nothing => #32
                WorkflowInput Source1
                -> Bonsai.Scripting.IronPython.PythonTransform NaN
                  Script:
                    from System import Single

                    @returns(Single)
                    def process(value):
                      return (Single(float.NaN))
                -> MulticastSubject "RewSide "
                -> WorkflowOutput
            #23, #27, #32 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany Set_Correct_Side
            SubscribeSubject Correct_Side => #0
            SubscribeSubject Correct_Side_Count => #1
            SubscribeSubject FirstLick => #2
            #2, #0 -> Zip
            -> Equal => #4
            -> Condition Correct_Side
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=1) => #6
            #6, #1 -> Zip
            -> Add
            -> MulticastSubject Correct_Side_Count => #9
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it%3 == 0
            -> IntProperty(Value=1) => #11
            #9 -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it%3 != 0
            -> IntProperty(Value=0) => #13
            #13, #11 -> Merge => #14
            SubscribeSubject Correct_Side => #15
            #14, #15 -> Zip
            -> Subtract
            -> Bonsai.Numerics.Abs
            -> MulticastSubject Correct_Side => #19
            #4 -> Condition Incorrect_Side
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> IntProperty(Value=0) => #21
            #19, #21 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany Write_Missing_Variables
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.IronPython.PythonTransform NaN => #1
              Script:
                from System import Single

                @returns(Single)
                def process(value):
                  return (Single(float.NaN))
            -> MulticastSubject TrialOutcome
            -> IntProperty(Value=0) => #3
            #1 -> MulticastSubject "Response_Latency (ms)"
            -> IntProperty(Value=0) => #5
            #1 -> MulticastSubject Trial_State
            -> IntProperty(Value=0) => #7
            #1 -> Bonsai.Scripting.Expressions.ExpressionTransform TimeFromMilliseconds => #8
              Expression: TimeSpan.FromMilliseconds(it)
            -> MulticastSubject ResponseWindow
            -> IntProperty(Value=0) => #10
            #8 -> MulticastSubject Delay_Period
            -> IntProperty(Value=0) => #12
            #1 -> MulticastSubject WN_Amp
            -> IntProperty(Value=0) => #14
            #0 -> BooleanProperty(Value=false) => #15
            -> MulticastSubject AbortTrial
            -> IntProperty(Value=0) => #17
            #15 -> MulticastSubject Anti_Bias
            -> IntProperty(Value=0) => #19
            #0 -> StringProperty(Value=NaN)
            -> MulticastSubject Rule
            -> IntProperty(Value=0) => #22
            Source1=#3, Source3=#5, Source4=#7, Source5=#1, Source6=#14, Source7=#10, Source8=#12, Source9=#17, Source10=#19, Source11=#22 -> Merge
            -> WorkflowOutput
        -> WorkflowOutput
    #0 -> Condition Stage_4(Description=Habituation)
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=4))
        -> WorkflowOutput
    -> SelectMany Full => #8
        WorkflowInput Source1
        -> SelectMany WN => #1
            SubscribeSubject Trial_State => #0
            -> Condition Pro
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> Disable SelectMany 50
                SubscribeSubject StimID
                -> PropertyMapping(Value) => #1
                WorkflowInput Source1 => #2
                ExternalizedMapping(Value(DisplayName=Low_Amp))
                -> IntProperty(Value=50)
                -> MulticastSubject WN_Amp
                -> GroupWorkflow Convert_To_Bonsai_Amp
                    SubscribeSubject Speaker_Y_Incercept => #0
                    SubscribeSubject Speaker_Slope
                    -> PropertyMapping(Value) => #2
                    WorkflowInput Source1 => #3
                    #3, #0 -> Zip
                    -> Subtract => #5
                    #5, #2 -> Divide(Operand=DoubleProperty(Value=1.3840476180425894))
                    -> WorkflowOutput
                -> PropertyMapping(SoundLevel) => #7
                #2, #7 -> Sink SetLevel => #8
                    ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                    WorkflowInput Source1 => #1
                    #1, #0 -> IntProperty(Value=60)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: (it-107.54)/-0.0764
                    -> PropertyMapping(Value)
                    -> IntProperty(Value=622)
                    -> Sink Left
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> Sink Right
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> WorkflowOutput
                #8, #1 -> IntProperty(Value=3)
                -> MulticastSubject SoundIndex => #10
                SubscribeSubject WN_Dur
                -> PropertyMapping(DueTime) => #12
                #10, #12 -> Delay(DueTime=PT0.3S)
                -> IntProperty(Value=30)
                -> MulticastSubject SoundIndex
                -> Take(Count=1)
                -> WorkflowOutput
            -> Disable SelectMany -1
                SubscribeSubject Stim_Dur
                -> PropertyMapping(DueTime) => #1
                WorkflowInput Source1 => #2
                ExternalizedMapping(Value) => #3
                #2, #3 -> FloatProperty(Value=-1)
                -> MulticastSubject Stim_Relative => #5
                #5, #1 -> Delay(DueTime=PT0.15S)
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany "< boundary" => #4
                SubscribeSubject Nb_Of_Stim
                -> Divide(Operand=IntProperty(Value=2))
                -> PropertyMapping(Upper)
                -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample
                -> SelectMany Play
                    WorkflowInput Source1 => #0
                    -> Condition 1
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=1))
                        -> WorkflowOutput
                    -> SelectMany -1 => #2
                        SubscribeSubject Stim_Dur
                        -> PropertyMapping(DueTime) => #1
                        WorkflowInput Source1 => #2
                        ExternalizedMapping(Value) => #3
                        #2, #3 -> FloatProperty(Value=-1)
                        -> MulticastSubject Stim_Relative => #5
                        #5, #1 -> Delay(DueTime=PT0.3S)
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Condition 2
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=2))
                        -> WorkflowOutput
                    -> SelectMany -0.75 => #4
                        SubscribeSubject Stim_Dur
                        -> PropertyMapping(DueTime) => #1
                        WorkflowInput Source1 => #2
                        ExternalizedMapping(Value) => #3
                        #2, #3 -> FloatProperty(Value=-0.75)
                        -> MulticastSubject Stim_Relative => #5
                        #5, #1 -> Delay(DueTime=PT0.3S)
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Condition 3
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=3))
                        -> WorkflowOutput
                    -> SelectMany -0.5 => #6
                        SubscribeSubject Stim_Dur
                        -> PropertyMapping(DueTime) => #1
                        WorkflowInput Source1 => #2
                        ExternalizedMapping(Value) => #3
                        #2, #3 -> FloatProperty(Value=-0.5)
                        -> MulticastSubject Stim_Relative => #5
                        #5, #1 -> Delay(DueTime=PT0.5S)
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Condition 4
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=4))
                        -> WorkflowOutput
                    -> SelectMany -0.25 => #8
                        SubscribeSubject Stim_Dur
                        -> PropertyMapping(DueTime) => #1
                        WorkflowInput Source1 => #2
                        ExternalizedMapping(Value) => #3
                        #2, #3 -> FloatProperty(Value=-0.25)
                        -> MulticastSubject Stim_Relative => #5
                        #5, #1 -> Delay(DueTime=PT0.5S)
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #2, #4, #6, #8 -> Merge
                    -> WorkflowOutput
                -> Take(Count=1)
                -> WorkflowOutput
            #0 -> Condition Anti
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Disable SelectMany 82
                SubscribeSubject StimID
                -> PropertyMapping(Value) => #1
                WorkflowInput Source1 => #2
                ExternalizedMapping(Value(DisplayName=Low_Amp))
                -> IntProperty(Value=82)
                -> MulticastSubject WN_Amp
                -> GroupWorkflow Convert_To_Bonsai_Amp
                    SubscribeSubject Speaker_Y_Incercept => #0
                    SubscribeSubject Speaker_Slope
                    -> PropertyMapping(Value) => #2
                    WorkflowInput Source1 => #3
                    #3, #0 -> Zip
                    -> Subtract => #5
                    #5, #2 -> Divide(Operand=DoubleProperty(Value=1.3840476180425894))
                    -> WorkflowOutput
                -> PropertyMapping(SoundLevel) => #7
                #2, #7 -> Sink SetLevel => #8
                    ExternalizedMapping(Value(DisplayName=SoundLevel)) => #0
                    WorkflowInput Source1 => #1
                    #1, #0 -> IntProperty(Value=83)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: (it-107.54)/-0.0764
                    -> PropertyMapping(Value)
                    -> IntProperty(Value=321)
                    -> Sink Left
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=34, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> Sink Right
                        WorkflowInput Source1
                        -> Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=35, PayloadType=U16, Payload=0)
                        -> MulticastSubject PlaySound
                        -> WorkflowOutput
                    -> WorkflowOutput
                #8, #1 -> IntProperty(Value=3)
                -> MulticastSubject SoundIndex => #10
                SubscribeSubject WN_Dur
                -> PropertyMapping(DueTime) => #12
                #10, #12 -> Delay(DueTime=PT0.3S)
                -> IntProperty(Value=30)
                -> MulticastSubject SoundIndex
                -> Take(Count=1)
                -> WorkflowOutput
            -> Disable SelectMany 1
                SubscribeSubject Stim_Dur
                -> PropertyMapping(DueTime) => #1
                WorkflowInput Source1 => #2
                ExternalizedMapping(Value) => #3
                #2, #3 -> FloatProperty(Value=1)
                -> MulticastSubject Stim_Relative => #5
                #5, #1 -> Delay(DueTime=PT0.15S)
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany "> boundary" => #8
                SubscribeSubject Nb_Of_Stim
                -> Divide(Operand=IntProperty(Value=2))
                -> PropertyMapping(Upper)
                -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample
                -> SelectMany Play
                    WorkflowInput Source1 => #0
                    -> Condition 4
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=4))
                        -> WorkflowOutput
                    -> SelectMany 0.25 => #2
                        SubscribeSubject Stim_Dur
                        -> PropertyMapping(DueTime) => #1
                        WorkflowInput Source1 => #2
                        ExternalizedMapping(Value) => #3
                        #2, #3 -> FloatProperty(Value=0.25)
                        -> MulticastSubject Stim_Relative => #5
                        #5, #1 -> Delay(DueTime=PT0.15S)
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Condition 3
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=3))
                        -> WorkflowOutput
                    -> SelectMany 0.5 => #4
                        SubscribeSubject Stim_Dur
                        -> PropertyMapping(DueTime) => #1
                        WorkflowInput Source1 => #2
                        ExternalizedMapping(Value) => #3
                        #2, #3 -> FloatProperty(Value=0.5)
                        -> MulticastSubject Stim_Relative => #5
                        #5, #1 -> Delay(DueTime=PT0.15S)
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Condition 2
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=2))
                        -> WorkflowOutput
                    -> SelectMany 0.75 => #6
                        SubscribeSubject Stim_Dur
                        -> PropertyMapping(DueTime) => #1
                        WorkflowInput Source1 => #2
                        ExternalizedMapping(Value) => #3
                        #2, #3 -> FloatProperty(Value=0.75)
                        -> MulticastSubject Stim_Relative => #5
                        #5, #1 -> Delay(DueTime=PT0.3S)
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Condition 1
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value) => #1
                        #0, #1 -> Equal(Operand=IntProperty(Value=1))
                        -> WorkflowOutput
                    -> SelectMany 1 => #8
                        SubscribeSubject Stim_Dur
                        -> PropertyMapping(DueTime) => #1
                        WorkflowInput Source1 => #2
                        ExternalizedMapping(Value) => #3
                        #2, #3 -> FloatProperty(Value=1)
                        -> MulticastSubject Stim_Relative => #5
                        #5, #1 -> Delay(DueTime=PT0.3S)
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #2, #4, #6, #8 -> Merge
                    -> WorkflowOutput
                -> Take(Count=1)
                -> WorkflowOutput
            Source1=#4, Source7=#8 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        SubscribeSubject ResponseWindow
        -> PropertyMapping(DueTime) => #3
        SubscribeSubject Delay_Period
        -> PropertyMapping(DueTime) => #5
        #1, #5 -> Delay(DueTime=PT0.5S)
        -> SelectMany AirPuff
            SubscribeSubject Anti_Bias => #0
            -> Condition Off
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> SelectMany Random => #2
                GroupWorkflow Coin_Flip => #0
                    Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
                    -> Bonsai.Numerics.Distributions.Sample
                    -> WorkflowOutput
                -> Condition Heads
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=0))
                    -> WorkflowOutput
                -> SelectMany Puff_Left => #2
                    WorkflowInput Source1
                    -> SelectMany Pulse_Left
                        Timer(DueTime=PT0S, Period=PT0.075S)
                        -> Take(Count=5)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform G
                          Expression: 'G'
                        -> MulticastSubject Arduino_Command
                        -> Delay(DueTime=PT0.5S)
                        -> WorkflowOutput
                    -> IntProperty(Value=0)
                    -> MulticastSubject AirPuff_Side
                    -> WorkflowOutput
                #0 -> Condition Tails
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> SelectMany Puff_Right => #4
                    WorkflowInput Source1
                    -> SelectMany Pulse_Right
                        Timer(DueTime=PT0S, Period=PT0.075S)
                        -> Take(Count=5)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform E
                          Expression: 'E'
                        -> MulticastSubject Arduino_Command
                        -> Delay(DueTime=PT0.5S)
                        -> WorkflowOutput
                    -> IntProperty(Value=1)
                    -> MulticastSubject AirPuff_Side
                    -> WorkflowOutput
                #2, #4 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #0 -> Condition On
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany Anti_Bias => #4
                SubscribeSubject P_Right => #0
                Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample => #2
                #2, #0 -> Zip => #3
                -> LessThan
                -> Condition => #5
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Condition Pro_State => #6
                    SubscribeSubject Trial_State
                    -> Equal(Operand=IntProperty(Value=0))
                    -> WorkflowOutput
                #5 -> Condition Anti_State => #7
                    SubscribeSubject Trial_State
                    -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                #3 -> GreaterThanOrEqual
                -> Condition => #9
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Condition Pro_State => #10
                    SubscribeSubject Trial_State
                    -> Equal(Operand=IntProperty(Value=0))
                    -> WorkflowOutput
                #7, #10 -> Merge
                -> SelectMany Puff_Left => #12
                    WorkflowInput Source1
                    -> SelectMany Pulse_Left
                        Timer(DueTime=PT0S, Period=PT0.075S)
                        -> Take(Count=5)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform G
                          Expression: 'G'
                        -> MulticastSubject Arduino_Command
                        -> Delay(DueTime=PT0.5S)
                        -> WorkflowOutput
                    -> IntProperty(Value=0)
                    -> MulticastSubject AirPuff_Side
                    -> WorkflowOutput
                #9 -> Condition Anti_State => #13
                    SubscribeSubject Trial_State
                    -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                #6, #13 -> Merge
                -> SelectMany Puff_Right => #15
                    WorkflowInput Source1
                    -> SelectMany Pulse_Right
                        Timer(DueTime=PT0S, Period=PT0.075S)
                        -> Take(Count=5)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform E
                          Expression: 'E'
                        -> MulticastSubject Arduino_Command
                        -> Delay(DueTime=PT0.5S)
                        -> WorkflowOutput
                    -> IntProperty(Value=1)
                    -> MulticastSubject AirPuff_Side
                    -> WorkflowOutput
                #15, #12 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #2, #4 -> Merge
            -> WorkflowOutput
        -> SelectMany GoCue => #8
            WorkflowInput Source1 => #0
            SubscribeSubject GoCueDur
            -> PropertyMapping(DueTime) => #2
            #0, #2 -> Delay(DueTime=PT0.3S)
            -> WorkflowOutput
        -> SelectMany Response => #9
            SubscribeSubject Beam1Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> IntProperty(Value=0) => #2
            SubscribeSubject Beam2Bool
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> IntProperty(Value=1) => #5
            #2, #5 -> Merge
            -> Take(Count=1)
            -> Sink ResetSpouts
                SubscribeSubject Beam1Bool
                -> Condition
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> BooleanProperty(Value=true)
                -> MulticastSubject Beam1Bool => #3
                SubscribeSubject Beam2Bool
                -> Condition
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> BooleanProperty(Value=true)
                -> MulticastSubject Beam2Bool => #7
                #3, #7 -> Merge
                -> WorkflowOutput
            -> Sink RecordFirstLick => #9
                WorkflowInput Source1
                -> MulticastSubject FirstLick
                -> WorkflowOutput
            SubscribeSubject AirPuff_Side => #10
            SubscribeSubject Trial_State => #11
            #10, #11 -> Zip => #12
            -> Condition "="
                WorkflowInput Source1
                -> Equal
                -> WorkflowOutput
            -> IntProperty(Value=0) => #14
            #12 -> Condition "Not ="
                WorkflowInput Source1
                -> NotEqual
                -> WorkflowOutput
            -> IntProperty(Value=1) => #16
            #14, #16 -> Merge => #17
            #9, #17 -> Zip => #18
            -> Condition "="
                WorkflowInput Source1
                -> Equal
                -> WorkflowOutput
            -> BooleanProperty(Value=true) => #20
            #18 -> Condition "Not ="
                WorkflowInput Source1
                -> NotEqual
                -> WorkflowOutput
            -> BooleanProperty(Value=false) => #22
            #20, #22 -> Merge
            -> MulticastSubject Correct
            -> Take(Count=1)
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #10
        #8, #3 -> Delay(DueTime=PT3S)
        -> BooleanProperty(Value=true) => #12
        #10, #12 -> Merge
        -> Take(Count=1)
        -> MulticastSubject AbortTrial => #15
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany Feedback => #17
            SubscribeSubject Correct => #0
            -> Condition Yes
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany Success
                SubscribeSubject FirstLick => #0
                -> Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> SelectMany RewardRight => #2
                    WorkflowInput Source1
                    -> Bonsai.Scripting.Expressions.ExpressionTransform A
                      Expression: 'A'
                    -> MulticastSubject Arduino_Command
                    -> IntProperty(Value=1)
                    -> MulticastSubject "RewSide "
                    -> WorkflowOutput
                #0 -> Condition
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=0))
                    -> WorkflowOutput
                -> SelectMany RewardLeft => #4
                    WorkflowInput Source1
                    -> Bonsai.Scripting.Expressions.ExpressionTransform C
                      Expression: 'C'
                    -> MulticastSubject Arduino_Command
                    -> IntProperty(Value=0)
                    -> MulticastSubject "RewSide "
                    -> WorkflowOutput
                #4, #2 -> Merge
                -> WorkflowOutput
            -> IntProperty(Value=1) => #3
            #0 -> Condition No
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> SelectMany Failure
                WorkflowInput Source1
                -> SelectMany Timeout
                    WorkflowInput Source1 => #0
                    SubscribeSubject TimeoutDuration
                    -> PropertyMapping(DueTime) => #2
                    #0, #2 -> Delay(DueTime=PT3S)
                    -> WorkflowOutput
                -> WorkflowOutput
            -> IntProperty(Value=0) => #6
            #3, #6 -> Merge
            -> WorkflowOutput
        #15 -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=-1) => #19
        #17, #19 -> Merge
        -> MulticastSubject TrialOutcome
        -> Take(Count=1)
        -> WorkflowOutput
        #8, #9 -> GroupWorkflow Record_Latency
            SubscribeSubject TrialEnd
            -> Condition => #1
                WorkflowInput Source1
                -> WorkflowOutput
            WorkflowInput Source1
            -> SelectMany Start_Timer => #3
                Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.001S)
                -> MulticastSubject Time
                -> WorkflowOutput
            WorkflowInput Source2 => #4
            #1, #4 -> Merge => #5
            #3, #5 -> TakeUntil
            -> TakeLast(Count=1)
            -> MulticastSubject "Response_Latency (ms)"
            -> WorkflowOutput
    #2, #4, #6, #8 -> Merge
    -> Sink IncrementTrial
        SubscribeSubject TrialNumber => #0
        IntProperty(Value=1) => #1
        #0, #1 -> Zip
        -> Add
        -> MulticastSubject TrialNumber
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput
-> SelectMany EndTrial
    WorkflowInput Source1
    -> BooleanProperty(Value=true)
    -> MulticastSubject TrialEnd
    -> WorkflowOutput
-> Repeat => #12
SubscribeSubject Exp_End
-> Condition
    WorkflowInput Source1
    -> WorkflowOutput
-> SelectMany End_Processes
    WorkflowInput Source1
    -> SelectMany Valves_Closed
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.Expressions.ExpressionTransform b
          Expression: 'b'
        -> MulticastSubject Arduino_Command => #2
        #0 -> Bonsai.Scripting.Expressions.ExpressionTransform d
          Expression: 'd'
        -> MulticastSubject Arduino_Command => #4
        #2, #4 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Speakers_Off
        WorkflowInput Source1
        -> IntProperty(Value=30)
        -> MulticastSubject SoundIndex
        -> WorkflowOutput
    -> WorkflowOutput
-> Bonsai.Shaders.Delay(DueTime=PT1S) => #16
#12, #16 -> TakeUntil
-> WorkflowOutput

GroupWorkflow SetTrialState
    IntProperty(Value=0)
    -> BehaviorSubject State_Counter

    FloatProperty(Value=0)
    -> BehaviorSubject Window_Average

    SubscribeSubject Rule => #4
    -> Condition Pro_Only
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=StringProperty(Value=Pro_Only))
        -> WorkflowOutput
    -> SelectMany "State = Pro" => #6
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> MulticastSubject Trial_State
        -> WorkflowOutput
    #4 -> Condition Anti_Only
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=StringProperty(Value=Anti_Only))
        -> WorkflowOutput
    -> SelectMany "State = Anti" => #8
        WorkflowInput Source1
        -> IntProperty(Value=1)
        -> MulticastSubject Trial_State
        -> WorkflowOutput
    #4 -> Condition Blocks_30
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=StringProperty(Value=Blocks_30))
        -> WorkflowOutput
    -> SelectMany Blocks_Of_30 => #10
        ExternalizedMapping(Value(DisplayName=Min_Block_Length))
        -> IntProperty(Value=30)
        -> BehaviorSubject Min_Block_Length

        ExternalizedMapping(Value(DisplayName=Window_Perf_Size))
        -> IntProperty(Value=20)
        -> BehaviorSubject Window_Perf_Size

        SubscribeSubject Trial_State => #6
        SubscribeSubject Window_Perf_Size
        -> PropertyMapping(Count) => #8
        SubscribeSubject AbortTrial => #9
        -> Condition No
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany Correct? => #11
            SubscribeSubject Correct
            -> Take(Count=1)
            -> WorkflowOutput
        -> Condition Yes
            WorkflowInput Source1
            -> WorkflowOutput
        -> FloatProperty(Value=1) => #13
        #11 -> Condition No => #14
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #9 -> Condition Yes => #15
            WorkflowInput Source1
            -> WorkflowOutput
        #14, #15 -> Merge
        -> FloatProperty(Value=0) => #17
        #13, #17 -> Merge => #18
        -> SelectMany Switch_State => #19
            WorkflowInput Source1 => #0
            SubscribeSubject Min_Block_Length
            -> PropertyMapping(State_Count) => #2
            #0, #2 -> Condition
                SubscribeSubject State_Counter => #0
                SubscribeSubject Window_Average
                -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.7)) => #2
                ExternalizedMapping(Value(DisplayName=State_Count)) => #3
                #0, #3 -> GreaterThanOrEqual(Operand=IntProperty(Value=30)) => #4
                #4, #2 -> CombineLatest
                -> LogicalAnd
                -> Take(Count=1)
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        -> IntProperty(Value=1) => #20
        #20, #6 -> Zip
        -> Subtract
        -> Bonsai.Numerics.Abs
        -> MulticastSubject Trial_State => #24
        #19 -> SelectMany Reset_Counter => #25
            SubscribeSubject State_Counter => #0
            WorkflowInput Source1 => #1
            #1, #0 -> Zip
            -> MemberSelector(Selector=Item2)
            -> Negate
            -> Take(Count=1)
            -> WorkflowOutput
        #19 -> SelectMany Gen_0s => #26
            FloatProperty(Value=0) => #0
            SubscribeSubject Window_Perf_Size
            -> PropertyMapping(Value)
            -> IntProperty(Value=20) => #3
            #0, #3 -> Zip
            -> Bonsai.Scripting.IronPython.PythonTransform Gen_list
              Script:
                @returns(list)
                def process(value):
                  float_0 = value[0]
                  window_size = value[1]
                  result = []
                  for _ in range(window_size):
                    result.append(float_0)
                  return result
            -> Merge
            -> Bonsai.Scripting.IronPython.PythonTransform To_float
              Script:
                from System import Single

                @returns(Single)
                def process(value):
                  return 0.0
            -> WorkflowOutput
        #18, #26 -> Merge => #27
        #27, #8 -> Bonsai.Dsp.Buffer(Count=20, Skip=1)
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0)
        -> MulticastSubject Window_Average
        -> IntProperty(Value=0) => #32
        #18 -> SelectMany Keep_State
            WorkflowInput Source1 => #0
            SubscribeSubject Min_Block_Length => #1
            -> PropertyMapping(State_Count) => #2
            #0, #2 -> Condition => #3
                SubscribeSubject State_Counter => #0
                ExternalizedMapping(Value(DisplayName=State_Count)) => #1
                #0, #1 -> LessThan(Operand=IntProperty(Value=30))
                -> Take(Count=1)
                -> WorkflowOutput
            #1 -> PropertyMapping(State_Count) => #4
            #0, #4 -> Condition => #5
                SubscribeSubject State_Counter => #0
                SubscribeSubject Window_Average => #1
                ExternalizedMapping(Value(DisplayName=State_Count)) => #2
                #0, #2 -> GreaterThanOrEqual(Operand=IntProperty(Value=30)) => #3
                ExternalizedMapping(Value(DisplayName=Window_Perf)) => #4
                #1, #4 -> LessThan(Operand=FloatProperty(Value=0.7)) => #5
                #3, #5 -> CombineLatest
                -> LogicalAnd
                -> Take(Count=1)
                -> WorkflowOutput
            #3, #5 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> IntProperty(Value=1) => #34
        #34, #25 -> Merge
        -> Accumulate
        -> MulticastSubject State_Counter => #37
        #24, #32, #37 -> Merge
        -> WorkflowOutput
    #4 -> Condition Blocks_15
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=StringProperty(Value=Blocks_15))
        -> WorkflowOutput
    -> SelectMany Blocks_Of_15 => #12
        ExternalizedMapping(Value(DisplayName=Min_Block_Length))
        -> IntProperty(Value=15)
        -> BehaviorSubject Min_Block_Length

        ExternalizedMapping(Value(DisplayName=Window_Perf_Size))
        -> IntProperty(Value=10)
        -> BehaviorSubject Window_Perf_Size

        ExternalizedMapping(Value(DisplayName=Perf_Threshold))
        -> FloatProperty(Value=0.8)
        -> BehaviorSubject Perf_Threshold

        SubscribeSubject Trial_State => #9
        SubscribeSubject Window_Perf_Size
        -> PropertyMapping(Count) => #11
        SubscribeSubject AbortTrial => #12
        -> Condition No
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany Correct? => #14
            SubscribeSubject Correct
            -> Take(Count=1)
            -> WorkflowOutput
        -> Condition Yes
            WorkflowInput Source1
            -> WorkflowOutput
        -> FloatProperty(Value=1) => #16
        #14 -> Condition No => #17
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #12 -> Condition Yes => #18
            WorkflowInput Source1
            -> WorkflowOutput
        #17, #18 -> Merge
        -> FloatProperty(Value=0) => #20
        #16, #20 -> Merge => #21
        -> SelectMany Switch_State => #22
            WorkflowInput Source1 => #0
            SubscribeSubject Min_Block_Length
            -> PropertyMapping(State_Count) => #2
            #0, #2 -> Condition
                SubscribeSubject State_Counter => #0
                SubscribeSubject Window_Average => #1
                ExternalizedMapping(Value(DisplayName=State_Count)) => #2
                #0, #2 -> GreaterThanOrEqual(Operand=IntProperty(Value=15)) => #3
                SubscribeSubject Perf_Threshold
                -> PropertyMapping(Value) => #5
                #1, #5 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #6
                #3, #6 -> CombineLatest
                -> LogicalAnd
                -> Take(Count=1)
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        -> IntProperty(Value=1) => #23
        #23, #9 -> Zip
        -> Subtract
        -> Bonsai.Numerics.Abs
        -> MulticastSubject Trial_State => #27
        #22 -> SelectMany Reset_Counter => #28
            SubscribeSubject State_Counter => #0
            WorkflowInput Source1 => #1
            #1, #0 -> Zip
            -> MemberSelector(Selector=Item2)
            -> Negate
            -> Take(Count=1)
            -> WorkflowOutput
        #22 -> SelectMany Gen_0s => #29
            FloatProperty(Value=0) => #0
            SubscribeSubject Window_Perf_Size
            -> PropertyMapping(Value)
            -> IntProperty(Value=10) => #3
            #0, #3 -> Zip
            -> Bonsai.Scripting.IronPython.PythonTransform Gen_list
              Script:
                @returns(list)
                def process(value):
                  float_0 = value[0]
                  window_size = value[1]
                  result = []
                  for _ in range(window_size):
                    result.append(float_0)
                  return result
            -> Merge
            -> Bonsai.Scripting.IronPython.PythonTransform To_float
              Script:
                from System import Single

                @returns(Single)
                def process(value):
                  return 0.0
            -> WorkflowOutput
        #21, #29 -> Merge => #30
        #30, #11 -> Bonsai.Dsp.Buffer(Count=10, Skip=1)
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0)
        -> MulticastSubject Window_Average
        -> IntProperty(Value=0) => #35
        #21 -> SelectMany Keep_State
            WorkflowInput Source1 => #0
            SubscribeSubject Min_Block_Length => #1
            -> PropertyMapping(State_Count) => #2
            #0, #2 -> Condition => #3
                SubscribeSubject State_Counter => #0
                ExternalizedMapping(Value(DisplayName=State_Count)) => #1
                #0, #1 -> LessThan(Operand=IntProperty(Value=15))
                -> Take(Count=1)
                -> WorkflowOutput
            #1 -> PropertyMapping(State_Count) => #4
            #0, #4 -> Condition => #5
                SubscribeSubject State_Counter => #0
                SubscribeSubject Window_Average => #1
                ExternalizedMapping(Value(DisplayName=State_Count)) => #2
                #0, #2 -> GreaterThanOrEqual(Operand=IntProperty(Value=15)) => #3
                ExternalizedMapping(Value(DisplayName=Window_Perf)) => #4
                #1, #4 -> LessThan(Operand=FloatProperty(Value=0.7)) => #5
                #3, #5 -> CombineLatest
                -> LogicalAnd
                -> Take(Count=1)
                -> WorkflowOutput
            #3, #5 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> IntProperty(Value=1) => #37
        #37, #28 -> Merge
        -> Accumulate
        -> MulticastSubject State_Counter => #40
        #27, #35, #40 -> Merge
        -> WorkflowOutput
    #4 -> Condition Random_Alternation
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=StringProperty(Value=Random_Alternation))
        -> WorkflowOutput
    -> SelectMany Random => #14
        SubscribeSubject TrialEnd
        -> Condition When_False
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany Fire_Distribution
            Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
            -> WorkflowOutput
        -> Bonsai.Numerics.Distributions.Sample
        -> MulticastSubject Trial_State
        -> WorkflowOutput
    #6, #8, #10, #12, #14 -> Merge
    -> WorkflowOutput

GroupWorkflow Antibias
  Description:
    Takes n trials back and calculates the difference between what the mouse should've done Vs what it actually did
    Weigh this difference vector by an exponential kernel, then pass through a sigmoid function to generate P(Right)

    FirstLick --> Choice (here 1 for left, 0 for right)
    Tone/WN_Amp --> Stimulus, dictates where the mouse should lick (here 1 for left, 0 for right)

    Defailt params:
    - ant_bias_window = 30
    - exp_rate = 1
    - sigmoid_slope_0 = 2
  Workflow
    FloatProperty(Value=0) => #0
    -> ToArray
    -> BehaviorSubject Hit_Left
    #0 -> ToArray
    -> BehaviorSubject Rule_Left

    DoubleProperty(Value=0.5)
    -> BehaviorSubject P_Right

    Disable SubscribeSubject Subject_Params
    -> Disable Bonsai.Scripting.IronPython.PythonTransform Anti_Bias_Exp_Rate
      Script:
        param = 'Anti_Bias_Exp_Rate'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> Disable PropertyMapping(Value)
    -> FloatProperty(Value=1)
    -> BehaviorSubject Exp_Rate

    Disable SubscribeSubject Subject_Params
    -> Disable Bonsai.Scripting.IronPython.PythonTransform Anti_Bias_Sigmoid_Slope
      Script:
        param = 'Anti_Bias_Sigmoid_Slope'
        param_type = float
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> Disable PropertyMapping(Value)
    -> FloatProperty(Value=1)
    -> BehaviorSubject Sigmoid_Slope_0

    Disable SubscribeSubject Subject_Params
    -> Disable Bonsai.Scripting.IronPython.PythonTransform Anti_Bias_Window
      Script:
        param = 'Anti_Bias_Window'
        param_type = int
        @returns(param_type)
        def process(value):
          param_start = value.find(param + ": ") + len(param + ": ")
          param_end = value.find(",", param_start)
          return(param_type(value[param_start:param_end]))
    -> Disable PropertyMapping(Value)
    -> IntProperty(Value=30)
    -> BehaviorSubject Anti_Bias_Window

    SubscribeSubject Anti_Bias_Window => #22
    -> PropertyMapping(Count) => #23
    #22 -> PropertyMapping(Count) => #24
    #22 -> PropertyMapping(Value)
    -> IntProperty(Value=30) => #26
    SubscribeSubject FirstLick => #27
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> FloatProperty(Value=1) => #29
    #27 -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> FloatProperty(Value=0) => #31
    #29, #31 -> Merge
    -> Skip(Count=1) => #33
    SubscribeSubject AbortTrial
    -> Condition => #35
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    #33, #35 -> Sample => #36
    FloatProperty(Value=0) => #37
    #37, #26 -> Zip
    -> Bonsai.Scripting.IronPython.PythonTransform Gen_floats
      Script:
        @returns(list)
        def process(value):
          float_0 = value[0]
          window_size = value[1]
          result = []
          for _ in range(window_size):
            result.append(float_0)
          return result
    -> Merge
    -> Bonsai.Scripting.IronPython.PythonTransform NaN => #41
      Script:
        from System import Single

        @returns(Single)
        def process(value):
          return (Single(float.NaN))
    #36, #41 -> Merge => #42
    #42, #23 -> BufferCount(Count=30, Skip=1) => #43
    -> SelectMany Count_Hit_Left
        WorkflowInput Source1
        -> Merge
        -> ToArray
        -> MulticastSubject Hit_Left
        -> WorkflowOutput
    -> Merge
    #43 -> MemberSelector(Selector=Count)
    SubscribeSubject AirPuff_Side => #47
    SubscribeSubject Trial_State => #48
    #47, #48 -> CombineLatest
    -> Equal => #50
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> FloatProperty(Value=1) => #52
    #50 -> Condition
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> FloatProperty(Value=0) => #54
    #52, #54 -> Merge
    -> Skip(Count=1) => #56
    #56, #35 -> Sample => #57
    #57, #41 -> Merge => #58
    #58, #24 -> BufferCount(Count=30, Skip=1)
    -> SelectMany Count_Rule_Left
        WorkflowInput Source1
        -> Merge
        -> ToArray
        -> MulticastSubject Rule_Left
        -> WorkflowOutput
    -> Merge

    SubscribeSubject Hit_Left => #62
    SubscribeSubject Rule_Left => #63
    -> SelectMany Antibias_Params => #64
        SubscribeSubject Anti_Bias_Window => #0
        SubscribeSubject Exp_Rate => #1
        SubscribeSubject Sigmoid_Slope_0 => #2
        #0, #1, #2 -> Zip
        -> WorkflowOutput
    #62, #63, #64 -> Zip
    -> Bonsai.Scripting.IronPython.PythonTransform Gen_P_Right_V2
      Description:
        Takes 3 inputs:
        - array of previous left choices
        - array of previous a priori left
        - tuple of 3 items: trials back, exponential rate and sigmoid slope
        Outputs P(Right)
      Script:
        @returns(float)
        def process(value):
          import math
          hit_left = value[0] #
          rule_left = value[1] #
          diff = [e-rule_left[c] for c,e in enumerate(hit_left)] # difference between hit left and a priori left
          diff_reverse = diff[::-1] # reverse order of incoming array to get earliest trials first

          # weigh this diff_reverse array with an exponential kernel that emphasizes recent history
          trials_back = value[2][0] # set size of exponential window
          rate = value[2][1] # set rate of exponential distribution
          kernel_window = [x / 10.0 for x in range(0, trials_back, 1)] # create kernel range, divide by 10 to capture most releant section of exponential function
          exp_kernel = [rate*(math.exp(-rate*x)) for x in kernel_window] # calculate exp fct for every kernel value
          exp_kernel = [x/sum(exp_kernel) for x in exp_kernel] # normalise
          bias =  sum([diff_reverse[i] * exp_kernel[i] for i in range(len(diff_reverse)) if diff_reverse[i] == diff_reverse[i] and exp_kernel[i] == exp_kernel[i]]) # calculate dot product of diff_reverse with exp_kernel using list comprehension, ignores NaN values
          # bias --> positive means left-bias, negative means right bias

          # pass this bias through a sigmoid function to obtain p_right
          slope_0 = value[2][2] # slope of sigmoid at x = 0
          beta = slope_0 * 4 # follows naturally from differentiation
          p_right = 1 / (1+math.exp(-beta*bias))
          return p_right
          #return bias
    -> MulticastSubject P_Right
    #62 -> Merge
    #63 -> Merge

SubscribeSubject Subscribe_Saving
-> Condition
    WorkflowInput Source1
    -> WorkflowOutput
-> SelectMany Save_Data
    SubscribeSubject FirstLick => #0
    SubscribeSubject TrialOutcome => #1
    SubscribeSubject TrialEnd
    -> Condition => #3
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject Animal_ID => #4
    SubscribeSubject "RewSide " => #5
    SubscribeSubject ITI => #6
    SubscribeSubject TrialNumber => #7
    SubscribeSubject AbortTrial => #8
    SubscribeSubject Correct => #9
    SubscribeSubject ResponseWindow => #10
    SubscribeSubject GoCueDur => #11
    SubscribeSubject CorrectCount => #12
    SubscribeSubject Trial_File_Name
    -> PropertyMapping(FileName) => #14
    SubscribeSubject Rig_ID => #15
    SubscribeSubject Room_ID => #16
    #8, #12, #11, #6, #10, #16, #15 -> CombineLatest => #17
    SubscribeSubject WN_Amp => #18
    #4, #7, #18, #0, #9, #5, #1 -> CombineLatest => #19
    #19, #17 -> CombineLatest => #20
    SubscribeSubject Beam1Bool => #21
    -> Timestamp => #22
    -> MemberSelector(Selector=Value) => #23
    #22 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #24
    #21 -> StringProperty(Value=Beam1Bool) => #25
    #23, #24, #25 -> Zip => #26
    SubscribeSubject Beam2Bool => #27
    -> Timestamp => #28
    -> MemberSelector(Selector=Value) => #29
    #28 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #30
    #27 -> StringProperty(Value=Beam2Bool) => #31
    #29, #30, #31 -> Zip => #32
    #26, #32 -> Merge
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #34
      Expression:
        new(
        Item1 as State,
        Item2 as Time,
        Item3 as Spout
        )
    SubscribeSubject Licks_File_Name
    -> PropertyMapping(FileName) => #36
    #34, #36 -> Bonsai.IO.CsvWriter(FileName=../Data/QP062/PRO_ANTI_QP062_2023_8_8/Detected_Licks.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    -> MemberSelector(Selector=State) => #38
    SubscribeSubject Exp_End
    -> Condition => #40
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject "Response_Latency (ms)" => #41
    SubscribeSubject Trial_State => #42
    SubscribeSubject AirPuff_Side => #43
    SubscribeSubject Anti_Bias => #44
    SubscribeSubject Rule => #45
    SubscribeSubject Delay_Period => #46
    SubscribeSubject Stage => #47
    #41, #42, #43, #44, #45, #46, #47 -> CombineLatest => #48
    #20, #48 -> CombineLatest => #49
    SubscribeSubject P_Right => #50
    SubscribeSubject Anti_Bias_Window => #51
    SubscribeSubject Exp_Rate => #52
    SubscribeSubject Sigmoid_Slope_0 => #53
    #50, #51, #52, #53 -> CombineLatest => #54
    #49, #54 -> CombineLatest => #55
    #55, #3 -> Sample
    -> Timestamp => #57
    -> MemberSelector(Selector=Value) => #58
    #57 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #59
    #58, #59 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #61
      Expression:
        new(
        Item1.Item1.Item1.Item1.Item1 as Animal_ID,
        Item1.Item1.Item1.Item1.Item2 as TrialNumber,
        Item1.Item1.Item1.Item1.Item3 as WN_Amp,
        Item1.Item1.Item1.Item1.Item4 as FirstLick,
        Item1.Item1.Item1.Item1.Item5 as Correct,
        Item1.Item1.Item1.Item1.Item6 as Rewside,
        Item1.Item1.Item1.Item1.Item7 as TrialOutcome,

        Item1.Item1.Item1.Item2.Item1 as AbortTrial,
        Item1.Item1.Item1.Item2.Item2 as CorrectCount,
        Item1.Item1.Item1.Item2.Item3 as GoCueDur,
        Item1.Item1.Item1.Item2.Item4 as ITI,
        Item1.Item1.Item1.Item2.Item5 as ReponseWindow,
        Item1.Item1.Item1.Item2.Item6 as Room_ID,
        Item1.Item1.Item1.Item2.Item7 as Rig_ID,

        Item1.Item1.Item2.Item1 as Response_Latency,
        Item1.Item1.Item2.Item2 as Trial_State,
        Item1.Item1.Item2.Item3 as AirPuff_Side,
        Item1.Item1.Item2.Item4 as Anti_Bias,
        Item1.Item1.Item2.Item5 as Rule,
        Item1.Item1.Item2.Item6 as Delay_Period,
        Item1.Item1.Item2.Item7 as Stage,

        Item1.Item2.Item1 as P_Right,
        Item1.Item2.Item2 as Anti_Bias_Window,
        Item1.Item2.Item3 as Anti_Bias_Window_Exp_Rate,
        Item1.Item2.Item4 as Anti_Bias_Sigmoid_Slope_0,

        Item2 as Time
        )
    #61, #14 -> Bonsai.IO.CsvWriter(FileName=../Data/QP062/PRO_ANTI_QP062_2023_8_8/Trial_Summary.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true) => #62
    -> MemberSelector(Selector=Correct) => #63
    #63, #38 -> Merge => #64
    #64, #40 -> TakeUntil
    #62 -> WorkflowOutput

GroupWorkflow "Stats " => #24
  Description:
    Light Blue = Percent_Correct
    Red = Percent_Right_Licks
    Orange = Percent_Abort_Trial
    Dark Blue = Normalised Response Latency
  Workflow
    GroupWorkflow Percent_Correct => #0
        SubscribeSubject Visualizer_Window_Size
        -> PropertyMapping(Count) => #1
        SubscribeSubject Correct => #2
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1) => #4
        #2 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=0) => #6
        #4, #6 -> Merge
        -> Skip(Count=1) => #8
        #8, #1 -> Bonsai.Dsp.Buffer(Count=30, Skip=1)
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0)
        -> WorkflowOutput
    GroupWorkflow Percent_Abort_Trial => #1
        SubscribeSubject Visualizer_Window_Size
        -> PropertyMapping(Count) => #1
        SubscribeSubject AbortTrial => #2
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1) => #4
        #2 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=0) => #6
        #4, #6 -> Merge
        -> Skip(Count=1) => #8
        #8, #1 -> Bonsai.Dsp.Buffer(Count=30, Skip=1)
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0)
        -> WorkflowOutput
    GroupWorkflow Percent_First_Lick_Right => #2
        SubscribeSubject FirstLick => #0
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> IntProperty(Value=0) => #2
        #0 -> Condition
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> IntProperty(Value=1) => #4
        #2, #4 -> Merge
        -> Skip(Count=1) => #6
        SubscribeSubject Visualizer_Window_Size
        -> PropertyMapping(Count) => #8
        #6, #8 -> Bonsai.Dsp.Buffer(Count=30, Skip=1)
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0)
        -> Disable MulticastSubject Percent_Right_Licks
        -> WorkflowOutput
    GroupWorkflow Average_Normalised_Latency => #3
        SubscribeSubject Visualizer_Window_Size
        -> PropertyMapping(Count) => #1
        SubscribeSubject "Response_Latency (ms)"
        -> Skip(Count=1) => #3
        #3, #1 -> Bonsai.Dsp.Buffer(Count=30, Skip=1)
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #6
        SubscribeSubject ResponseWindow
        -> MemberSelector(Selector=TotalSeconds)
        -> Multiply(Operand=DoubleProperty(Value=1000))
        -> PropertyMapping(Value) => #10
        #6, #10 -> Divide(Operand=DoubleProperty(Value=3000))
        -> WorkflowOutput
    DoubleProperty(Value=0) => #4
    #0, #4 -> Merge => #5
    DoubleProperty(Value=0) => #6
    #1, #6 -> Merge => #7
    DoubleProperty(Value=0) => #8
    #2, #8 -> Merge => #9
    DoubleProperty(Value=0) => #10
    #3, #10 -> Merge => #11
    #5, #7, #9, #11 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
      Expression:
        new(
        Item1 as Percent_Correct,
        Item2 as Percent_Abort_Trial,
        Item3 as Right_Bias,
        Item4 as Normalized_Response_Latency
        )
    SubscribeSubject Correct => #14
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> FloatProperty(Value=1) => #16
    #14 -> FloatProperty(Value=1)
    -> Accumulate => #18
    #14 -> Condition
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> FloatProperty(Value=0) => #20
    #16, #20 -> Merge
    -> Skip(Count=1)
    -> Accumulate => #23
    #23, #18 -> Zip
    -> Divide => #25
    #13, #25 -> CombineLatest
    -> WorkflowOutput

    SubscribeSubject Correct
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> IntProperty(Value=1)
    -> Accumulate
    -> MulticastSubject CorrectCount
-> MemberSelector(Selector=Item1)
-> Bonsai.Design.Visualizers.RollingGraphBuilder
  ValueSelector="Percent_Correct,Percent_Abort_Trial,Right_Bias,Normalized_Response_Latency"
  SymbolType=None
  LineWidth=3
  Capacity=nil
  Min=nil
  Max=nil
#24 -> MemberSelector(Selector=Item2)
