<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>C:\Users\Psychophysics\Desktop\HeadFixedBehavior\Params\Rig_Params.csv</io:FileName>
        <io:SkipRows>0</io:SkipRows>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Y_Intercept</ipy:Name>
        <ipy:Script>param = 'Speaker_Y_Intercept' 
param_type = float
@returns(param_type)
def process(value):
  param_start = value.find(param + ": ") + len(param + ": ")
  param_end = value.find(",", param_start)
  return(param_type(value[param_start:param_end]))</ipy:Script>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Speaker_Y_Incercept</Name>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Slope</ipy:Name>
        <ipy:Script>param = 'Speaker_Slope' 
param_type = float
@returns(param_type)
def process(value):
  param_start = value.find(param + ": ") + len(param + ": ")
  param_end = value.find(",", param_start)
  return(param_type(value[param_start:param_end]))</ipy:Script>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Speaker_Slope</Name>
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>C:\Users\Psychophysics\Desktop\HeadFixedBehavior\Params\Rig_Params.csv</io:FileName>
        <io:ListSeparator />
        <io:SkipRows>0</io:SkipRows>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Sound_Card</ipy:Name>
        <ipy:Script>@returns(str)
def process(value):
  len_output = 4
  param_spacing = 2
  param = 'Sound_Card_Port' 
  start = value.find(param) + len(param) + param_spacing
  end = start + len_output
  return(value[start:end])</ipy:Script>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="PortName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>HarpSoundCard</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>PlaySound</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Soundcard?</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SoundIndex</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Freq</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>@returns(float)
def process(value):
  return 2**value</ipy:Script>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>uint16(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Address>32</harp:Address>
              <harp:PayloadType>U16</harp:PayloadType>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StopSound</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>3</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>byte(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Address>33</harp:Address>
              <harp:PayloadType>U8</harp:PayloadType>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Volume</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>uint16(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="harp:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Address>34</harp:Address>
                    <harp:PayloadType>U8</harp:PayloadType>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Address>35</harp:Address>
              <harp:PayloadType>U8</harp:PayloadType>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:Device">
                <harp:PortName>COM8</harp:PortName>
                <harp:DeviceState>Active</harp:DeviceState>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:LedState>On</harp:LedState>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disable</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:DelaySubscription">
                <gl:DueTime>PT1S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>SoundIndex</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SoundIndex</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateHarpMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U16</harp:PayloadType>
                <harp:Payload>0</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>PlaySound</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Soundcard?" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Soundcard?</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>11.5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Freq</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1000</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Volume</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Freq</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>PlayTone</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>3</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StopSound</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Stim_Dur (ms)" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>300</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>TimeFromMilliseconds</scr:Name>
              <scr:Expression>TimeSpan.FromMilliseconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Stim_Dur</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>3</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimID</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="23" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="27" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="30" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="22" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="22" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source3" />
            <Edge From="22" To="23" Label="Source2" />
            <Edge From="23" To="25" Label="Source1" />
            <Edge From="23" To="28" Label="Source1" />
            <Edge From="24" To="25" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="44" To="45" Label="Source1" />
            <Edge From="46" To="47" Label="Source1" />
            <Edge From="48" To="49" Label="Source1" />
            <Edge From="49" To="50" Label="Source1" />
            <Edge From="50" To="51" Label="Source1" />
            <Edge From="52" To="53" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Start_Amp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>45</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Start_Amp</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Max_Amp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>100</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Max_Amp</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT5S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Max_Amp</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Start_Amp</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="Divide">
        <Operand xsi:type="IntProperty">
          <Value>5</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="IntProperty">
          <Value>1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Count" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>12</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Play_WN</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>StimID</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start_Amp</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Convert_To_Bonsai_Amp</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Speaker_Y_Incercept</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Speaker_Slope</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>Start_Amp</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Subtract" />
                  <Expression xsi:type="Divide">
                    <Operand xsi:type="DoubleProperty">
                      <Value>1.3840476180425894</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="5" Label="Source2" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="7" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SoundLevel" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>SetLevel</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="SoundLevel" />
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>96</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>(it-107.54)/-0.0764</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>151</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Sink">
                    <Name>Left</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:CreateHarpMessage">
                            <harp:MessageType>Write</harp:MessageType>
                            <harp:Address>34</harp:Address>
                            <harp:PayloadType>U16</harp:PayloadType>
                            <harp:Payload>0</harp:Payload>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>PlaySound</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:Sink">
                    <Name>Right</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:CreateHarpMessage">
                            <harp:MessageType>Write</harp:MessageType>
                            <harp:Address>35</harp:Address>
                            <harp:PayloadType>U16</harp:PayloadType>
                            <harp:Payload>0</harp:Payload>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>PlaySound</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source2" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>3</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SoundIndex</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>30</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SoundIndex</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="7" Label="Source2" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Increment_Amp</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start_Amp</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="MulticastSubject">
              <Name>Start_Amp</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Render_Loop</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>1</gl:Width>
                <gl:Height>1</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Black</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Minimized</gl:WindowState>
                <gl:DisplayDevice>Primary</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT0S</gl:DueTime>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>None</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Convert_To_Bonsai_Amp</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Speaker_Y_Incercept</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Speaker_Slope</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>50</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>Start_Amp</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="Divide">
              <Operand xsi:type="DoubleProperty">
                <Value>1.3840476180425894</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="6" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="8" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="23" Label="Source1" />
      <Edge From="16" To="18" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source2" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>