<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:p1="clr-namespace:System.Windows.Forms;assembly=System.Windows.Forms, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089"
                 xmlns:p2="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>'T'</scr:Expression>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Arduino_Command</Name>
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>../../Params/Rig_Params.csv</io:FileName>
        <io:ListSeparator />
        <io:SkipRows>0</io:SkipRows>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Arduino_Port</ipy:Name>
        <ipy:Script>param = 'Arduino_Port' 
param_type = str
@returns(param_type)
def process(value):
  param_start = value.find(param + ": ") + len(param + ": ")
  param_end = value.find(",", param_start)
  return(param_type(value[param_start:param_end]))</ipy:Script>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="PortName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Arduino</Name>
        <Description>Workflows to connect and interact with Harp Behaviour Module

Will initialise device and create subjects:

BehModuleInput -- Messagebytes -- output from devicecommand node to issue outputs to harp board

BehBytes -- bytesarray -- messagebytes output to be written to .bin file with MatrixWriter node

BeamXbool -- bool -- readout  for hi/lo state of photogate/lickspout connected to ethernet breakout ports
</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:CreateSerialPort">
                <io:Name>ArduinoNano</io:Name>
                <io:PortName>COM10</io:PortName>
                <io:BaudRate>9600</io:BaudRate>
                <io:Encoding>us-ascii</io:Encoding>
                <io:Parity>None</io:Parity>
                <io:ParityReplace>63</io:ParityReplace>
                <io:DataBits>8</io:DataBits>
                <io:StopBits>One</io:StopBits>
                <io:Handshake>None</io:Handshake>
                <io:DiscardNull>false</io:DiscardNull>
                <io:DtrEnable>true</io:DtrEnable>
                <io:RtsEnable>false</io:RtsEnable>
                <io:ReadBufferSize>4096</io:ReadBufferSize>
                <io:WriteBufferSize>2048</io:WriteBufferSize>
                <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:DelaySubscription">
                <gl:DueTime>PT1S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="io:SerialStringRead">
                  <io:PortName>ArduinoNano</io:PortName>
                  <io:NewLine>\n</io:NewLine>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:BufferCount">
                  <rx:Count>3</rx:Count>
                  <rx:Skip xsi:nil="true" />
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="scr:ExpressionTransform">
                <scr:Expression>new(
it[0] as ID,
Convert.ToInt32(it[1]) == 1 as State,
Convert.ToSingle(it[2]) as time
)</scr:Expression>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="gl:DelaySubscription">
                  <gl:DueTime>PT1S</gl:DueTime>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Arduino_Command</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringWrite">
                <io:PortName>ArduinoNano</io:PortName>
                <io:NewLine>\n</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:DelaySubscription">
                <gl:DueTime>PT1S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="True_Arduino" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:SubscribeWhen" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>ID</Selector>
                    </Expression>
                    <Expression xsi:type="ipy:PythonTransform">
                      <ipy:Script>@returns(bool)
def process(value):
  return "Left input" in value</ipy:Script>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>State</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
                <Property Name="Value" DisplayName="Emulate" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="BooleanProperty">
                  <Value>false</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="Emulate" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>Poke_1_Emulator</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="Value" DisplayName="Emulate" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="BooleanProperty">
                        <Value>false</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="Value" DisplayName="Filter" />
                    </Expression>
                    <Expression xsi:type="PropertySource" TypeArguments="wie:KeyDown,p1:Keys">
                      <MemberName>Filter</MemberName>
                      <Value>D1</Value>
                    </Expression>
                    <Expression xsi:type="PropertyMapping">
                      <PropertyMappings>
                        <Property Name="Filter" />
                      </PropertyMappings>
                    </Expression>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="SuppressRepetitions" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="wie:KeyDown">
                        <wie:Filter>D1</wie:Filter>
                        <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="BooleanProperty">
                        <Value>false</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="PropertyMapping">
                      <PropertyMappings>
                        <Property Name="Filter" />
                      </PropertyMappings>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="wie:KeyUp">
                        <wie:Filter>D1</wie:Filter>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="BooleanProperty">
                        <Value>true</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Merge" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:SubscribeWhen" />
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="12" Label="Source2" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="3" To="8" Label="Source1" />
                    <Edge From="4" To="6" Label="Source1" />
                    <Edge From="5" To="6" Label="Source2" />
                    <Edge From="6" To="7" Label="Source1" />
                    <Edge From="7" To="11" Label="Source2" />
                    <Edge From="8" To="9" Label="Source1" />
                    <Edge From="9" To="10" Label="Source1" />
                    <Edge From="10" To="11" Label="Source1" />
                    <Edge From="11" To="12" Label="Source1" />
                    <Edge From="12" To="13" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Merge" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>Beam1Bool</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>ID</Selector>
                    </Expression>
                    <Expression xsi:type="ipy:PythonTransform">
                      <ipy:Script>@returns(bool)
def process(value):
  return "Right input" in value</ipy:Script>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>State</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="Emulate" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>Poke_2_Emulator</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="Value" DisplayName="Emulate" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="BooleanProperty">
                        <Value>false</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="Value" DisplayName="Filter" />
                    </Expression>
                    <Expression xsi:type="PropertySource" TypeArguments="wie:KeyDown,p1:Keys">
                      <MemberName>Filter</MemberName>
                      <Value>D2</Value>
                    </Expression>
                    <Expression xsi:type="PropertyMapping">
                      <PropertyMappings>
                        <Property Name="Filter" />
                      </PropertyMappings>
                    </Expression>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="SuppressRepetitions" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="wie:KeyDown">
                        <wie:Filter>D2</wie:Filter>
                        <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="BooleanProperty">
                        <Value>false</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="PropertyMapping">
                      <PropertyMappings>
                        <Property Name="Filter" />
                      </PropertyMappings>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="wie:KeyUp">
                        <wie:Filter>D2</wie:Filter>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="BooleanProperty">
                        <Value>true</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Merge" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:SubscribeWhen" />
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="12" Label="Source2" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="3" To="8" Label="Source1" />
                    <Edge From="4" To="6" Label="Source1" />
                    <Edge From="5" To="6" Label="Source2" />
                    <Edge From="6" To="7" Label="Source1" />
                    <Edge From="7" To="11" Label="Source2" />
                    <Edge From="8" To="9" Label="Source1" />
                    <Edge From="9" To="10" Label="Source1" />
                    <Edge From="10" To="11" Label="Source1" />
                    <Edge From="11" To="12" Label="Source1" />
                    <Edge From="12" To="13" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Merge" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>Beam2Bool</Name>
              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="13" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="14" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="17" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="12" To="14" Label="Source2" />
            <Edge From="12" To="17" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="14" To="24" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="22" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="19" To="26" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source2" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="28" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source2" />
            <Edge From="28" To="29" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="ValveNumber" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>2</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>ValveNumber</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="ValveTime(ms)" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>30</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>TimeSpan.FromMilliseconds(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>ValveTime</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ValveTime</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="DueTime" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT1S</rx:DueTime>
          <rx:Period>PT1S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DelaySubscription">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Check_Valve_1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>ValveNumber</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>Left_Open</scr:Name>
        <scr:Expression>'c'</scr:Expression>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Arduino_Command</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.03S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>Left_Close</scr:Name>
        <scr:Expression>'d'</scr:Expression>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Arduino_Command</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Check_Valve_2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>ValveNumber</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>Right_Open</scr:Name>
        <scr:Expression>'a'</scr:Expression>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Arduino_Command</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>End</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Count" DisplayName="Count" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ValveTime</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="DueTime" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.03S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>Right_Close</scr:Name>
        <scr:Expression>'b'</scr:Expression>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Arduino_Command</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>200</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Last" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="p2:BehaviorCommand">
        <p2:Type>ClearOutput</p2:Type>
        <p2:Mask>Poke2Valve</p2:Mask>
      </Expression>
      <Expression xsi:type="p2:BehaviorCommand">
        <p2:Type>ClearOutput</p2:Type>
        <p2:Mask>Poke1Valve</p2:Mask>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>2</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="GroupWorkflow">
        <Name>Render_Loop</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>1</gl:Width>
                <gl:Height>1</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Black</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Minimized</gl:WindowState>
                <gl:DisplayDevice>Primary</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT0S</gl:DueTime>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="21" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="17" To="24" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="35" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="32" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="39" Label="Source2" />
      <Edge From="29" To="36" Label="Source2" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source2" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source2" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="39" To="41" Label="Source1" />
      <Edge From="40" To="42" Label="Source1" />
      <Edge From="41" To="42" Label="Source2" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>